' Revision 1.1  2011/11/07 jeff
' Added multiple juicer functionality
#include "../../Spike2Util/UsreyUtil.s2s"

var ctCheckAscii% := 0;
var ctUseIODigitalWriteOut% := 0;
var StimHandle;	' vsg application handle
var JuicerIndex%;
' Local file system variables. 
bin$ := View(App(3)).FileName$(1) + View(App(3)).FileName$(2) + "..\\bin";	' Location of executables is ..\bin, relative to script dir
script$ := View(App(3)).FileName$(1) + View(App(3)).FileName$(2);	' folder containing this script

'Set a juicer sequencer variable so we can use this on any rig
GetJuicerType%();
SampleSeqVar(1,200);  'Also need to set the open duration for the juicer

' Dialog
if CableTestDialog%() = 0 then
    halt;
endif


' Set up sampling. 
CreateSampleConfiguration();


var DataWindow%;
DataWindow% := FileNew(0,4);
Window(-0.235849,52.746,97.2484,99.8856);
View(DataWindow%).WindowVisible(1);
XRange(0, 30);

View(App(8)).WindowVisible(0);	'Hide the standard sample bar
View(App(9)).WindowVisible(1);	'Open sequencer controls for this script
ToolbarVisible(1);
ToolbarSet(1,"Sample start",Start%);
ToolbarSet(2,"Sample stop", Stop%);
ToolbarEnable(2,0);
Toolbar("Go",12345);








func CableTestDialog%()
var i%;
DlgCreate("Cable Test");
DlgCheck(1, "Ascii triggers?");
DlgCheck(2, "Use vsgIOWriteDigitalOut?");
i% := DlgShow(ctCheckAscii%, ctUseIODigitalWriteOut%);
return i%;
end




func Start%()
var CommandLine$;

CommandLine$ := "cmd /k " + bin$ + "\\CableTest.exe -n";
if ctCheckAscii% = 1 then
    CommandLine$ += " -a";
endif
    
if ctUseIODigitalWriteOut% = 1 then
    CommandLine$ += " -d";
endif


'Begin the stimulus program. It will take a few seconds for the VSG to initialize.
PrintLog(CommandLine$+"\n");
SampleStart(0); 'Start sampling
    
' Set Sequencer Variable #3 based on juicer type 
SetJuicerSequencerVariable%();
    
StimHandle := ProgRun(CommandLine$,1);
if StimHandle <0 then Message("Could not start stimulus."); Stop%(); halt; endif
'Yield(5);	'Wait a few seconds to make sure the VSG has time to initialize.

'ToolbarSet(0,"",IdleProcessing%);	'Enable the IdleProcessing function
ToolbarEnable(2,1);
ToolbarEnable(1,0);
View(DataWindow%);
return 1;
end; 

func Stop%()
SampleStop();
ProgKill(StimHandle);
'ProgRun(bin$ + "\\ClearTrigger",0); 
end;






proc CreateSampleConfiguration()
var chan%;
var port%;
SampleClear(); 'Set standard sampling state
SampleAutoFile(0); 'Disable automatic file naming
SampleAutoComment(0); 'Prompt for comment after sampling
SampleAutoCommit(60); 'Seconds between each file commit

'Channel recording definitions
for chan% := 1 to 8 do
	port% := chan%-1;
	SampleEvent(chan%, port%, 2, 3600); 'Trigger channel, port, type
	SampleTitle$(chan%, "Port " + str$(port%));
next
    
    SampleWaveform(10, 3, 1000);
    SampleTitle$(10, "Juice line");
    
if SampleSequencer(script$ + "\\CableTest.pls")<>0 then
	Message("CableTest.pls not found!");
endif
SampleOptimise(2,2,2,2,50);  'Set optimise mode (do this last)
SampleMode(1); 'Continuous sampling
end;


func GetJuicerType%()
    
    'Get the proper value for the Juicer Index
    var key$;
    key$ := GetRigName$() + "\\" + GetCurrentConfiguration$() + "\\DAQ";
    JuicerIndex% := GetIntRegistryValue%(key$, "JuicerIndex", JuicerIndex%);
    
    return JuicerIndex%;
    
end



func SetJuicerSequencerVariable%()
   
    'Set sample sequencer variable 3 to 0 if juicer is open-high, and to 1 if juicer is open-low
    'This is equivalent to setting sample sequencer variable 3 to the value of the bit when closed
    if JuicerIndex% = 1 then 'open high
        SampleSeqVar(3,0);
    else
        if JuicerIndex% = 2 then 'open low
            SampleSeqVar(3,1);
        endif
    endif
    
end
