

'CuedAtten - a re-work of the AttenGoNoGo script to allow cue images and a few other changes
#include "../../Spike2Util/UsreyUtil.s2s"
#include "UsreyFixationPoint.s2s"
#include "UsreyDAQ.s2s"
#include "Joystick.s2s"
#include "Unic.s2s"


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' 	Heartbeat script dialog START
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''



' Overall script control vars
var Pause% := 0;
var advanceOnAbort% := 1;  'Evan now wants to advance on aborts.  Making this a variable (not in dialog) for easy switching back if necessary.
var trialNotStarted%;  'This could get sticky.  Right now, this defaults to 0 (assume trial started) and is set to one for specific aborts prior to StateStartTrial.  Perhaps could default to 1, then set to 0 in StateStartTrial.
var rewardWithheld% := 0;
var tTrialStart;
'var caAudibleElectrode% := 0;  'looks like this will not work

' Channel numbers and handles
var StimHandle%;			' handle for stimulus application
var DataWindow%;		' 
var XChannel%;
var YChannel%;
var JoyChannel%;

var FrameTriggerChannel%;
var SynchChannel%;
var FixationPointChannel%;
var StimChannel%;
var StimChangeChannel%;
var ReadyChannel%;

' tuning curves
var TuningWindow%[8];	' one for each channel. There'd better not be more than 8 channels! 
' XY window stuff
var XYWindow%;			' 
var iStimChannel%;	' channel number for stimulus in xy window
var iFixationWindowChannel%;' channel number for fixation window in xy window
var iMonitorChannel%;	' channel number for monitor position display in xy window


' Assign channel numbers for eye X,Y and trigger. 
XChannel% := 23;
YChannel% := 24;
FrameTriggerChannel% := 25;
FixationPointChannel% := 26;
StimChannel% := 27;
StimChangeChannel% := 28;  '??
ReadyChannel% := 29;
JoyChannel% := 22;

LogInit(1);

' Check for valid data file path
if Len(dataDataSet$) = 0 then
	Message("No data set is selected! Edit Data parameters...");
	' Might be nice to open the dialog here....
	halt;
endif;

'Create Sample Configuration
CreateSampleConfiguration();

' Get display windows ready
InitializeWindows();

' Prepare the toolbar buttons
InitializeToolbar();



' Used to hard-quit from toolbar. This will close data files without saving!!! 
' It is important that this function be disabled once sampling is started!!!

func Quit%()
	FileClose(-1,-1);
	return 0;
end;




''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc CreateSampleConfiguration()
    'In this function I am retaining the commented-out versions of the Plexon code from Henry's rig just in case
	var index;
    var key$;
    key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Temp\\Filepref";
    SampleClear(); 'Set standard sampling state
    
    FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 3);
    FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 1);
    'if UsePlexon% = 0 then
    SampleAutoName$(dataCellName$ + "_eeg_000");  'NOTE: maximum of 13 characters!!!
    SampleAutoFile(1);  'Enable automatic file naming
    
	SampleAutoComment(0); 'Prompt for comment after sampling
	SampleAutoCommit(60); 'Seconds between each file commit
    
    SampleEvent(FrameTriggerChannel%,0,2,3600); 'Trigger channel, level
    SampleComment$(FrameTriggerChannel%,"Frame");
    SampleTitle$(FrameTriggerChannel%,"Frame");
    
    SampleEvent(FixationPointChannel%,2,2,3600); 'Trigger channel, level
    SampleComment$(FixationPointChannel%,"Fixation");
    SampleTitle$(FixationPointChannel%,"Fixation");
    
    SampleEvent(StimChangeChannel%,4,2,3600); 'Trigger channel, level
    SampleComment$(StimChangeChannel%,"Stim Chg.");
    SampleTitle$(StimChangeChannel%,"Stim Chg.");
    
    SampleEvent(ReadyChannel%,1,2,3600); 'Trigger channel, level
    SampleComment$(ReadyChannel%,"VSG Ready");
    SampleTitle$(ReadyChannel%,"VSG Ready");
    
    'Note that I'm just ALWAYS making a stim channel because otherwise I'd have to make some big changes to Stop% and I'd rather get this working
    SampleEvent(StimChannel%,3,2,3600); 'Trigger channel, level
    SampleComment$(StimChannel%,"Stim");
    SampleTitle$(StimChannel%,"Stim");
    
    '''Note that the default joystick port is port 13
    'printlog("Joystick port is %d\n",GetJoystickPort%());
    'halt
    
    ' Set up channels for sampling electrodes.
    'docase
    'case UsePlexon% = 1 then  'call Plexon setup function, this will ONLY set up the sampling configuration for the Micro1401 mark II.  The Power1401 will be set up from its own dedicated script in its dedicated Spike2 instance
    '    CreatePlexonSamplingConfiguration1824Micro(); 'Note that for right now the ONLY Plexon configuration is 18 WaveMark/24 LFP (maximal WMs for 24 LFPs, trust me)
    'case UsePlexon7WM15CN% = 1 then  'call 7 wavemark, 15 continuous setup
    '    CreateElectrodeSamplingConfiguration7WM15CN();
    'else  'just set up the channels as expected
    GetElectrodeParameters();
    'printlog("num wavemark ports = %d and num continuous ports = %d\n",numWavemarkPorts%,numContinuousPorts%); 
    'CreateElectrodeSamplingConfiguration(1, 11);
    CreateElectrodeSamplingConfiguration32(1, 1+numWavemarkPorts%, ExcludedChans%);  'updated to have continuous channels start where wavemark channels leave off.
    'endcase;
	
    ' Set up eye channels 
    SampleWaveform(XChannel%,GetEyeXPort%(),1000);
    SampleTitle$(XChannel%,"Eye X");
    SampleWaveform(YChannel%,GetEyeYPort%(),1000);
    SampleTitle$(YChannel%,"Eye Y");
    
	SampleTextMark(200);  'increase number of allowed characters, 1 is so stingy!
    
	'SampleSequencer(script$ + "Attention.pls");
    SampleSequencer(script$ + "Tuning.pls");
    'if UsePlexon% = 1 then  'Set optimise mode (do this last, so it's outside of the CreatePlexonSamplingConfiguration... functions)
    '    SampleOptimise(0,1,4,0,0,0,0);  'for the Micro 1401 mk II: manually set sampling timing, group channels with same ideal rate, micro1401, unused, unused, do not disable for compatibility, no burst mode
    'else
    SampleOptimise(2,2,2,2,50);  'otherwise: full optimize timing, channels may have different rates, Power1401 (lowest common denominator, so eh), low usPerTime of 2, high usPerTime of 50
    'endif;
	SampleMode(1); 'Continuous sampling
end;



proc InitializeWindows()
    
    var index%;
    var twopi;
    twopi := 2.0*4.0*ATan(1.0);
    
	'Open the data sampling window
	DataWindow% := FileNew(0,4);  'show spike shape setup dialog
    printlog("datawindow is %d\n",dataWindow%);
	Window(0,48,100,95);
	View(DataWindow%).WindowVisible(1);
    
    'Open an XY view to display eye position
    XYWindow% := FileNew(12);
    XRange(-30,30);
    YRange(-2,-30,30);
    XYDrawMode(0,5,0);
    WindowVisible(1);
    Window(0, 0, 100, 47);
    XYColour(1,16);
    XYSize(1,-1);
        
    
    'Create a new channel in the XY view to display the fixation point
    iStimChannel% := XYSetChan(0);
    
    'Create a new channel in the XY view to show the monitor's location
    iMonitorChannel% := XYSetChan(0);
    XYColour(iMonitorChannel%,13);
    XYDrawMode(iMonitorChannel%,3,1);
    XYJoin(iMonitorChannel%,2);
    XYAddData(iMonitorChannel%,-9,-7);
    XYAddData(iMonitorChannel%,9,-7);
    XYAddData(iMonitorChannel%,9,7);
    XYAddData(iMonitorChannel%,-9,7);        
    
    
end;




'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' InitializeToolbar - prepare toolbar buttons. Note that the idle processing function (ToolbarSet(0, blah, blah)) is 
' not set here. That's done when the user hits the start button.
'
proc InitializeToolbar()
    
    
	View(App(8)).WindowVisible(0);	'Hide the standard sample bar
	ToolbarVisible(1);
    '    if UsePlexon% = 1 then
    '        ToolbarSet(1,"StartPlexon",StartPlexon%);
    '    else
    ToolbarSet(1,"Sample start",Start%);
    '    endif;
	ToolbarSet(2,"Sample stop", Stop%);
    ToolbarSet(3,"Juice", Reward%);  'moved from 3 to 5 because Stacey was accidentally clicking Sample Stop sometimes, there are no ToolbarEnable commands for juice, it is always enabled
	ToolbarSet(4,"Quit",Quit%);
	ToolbarEnable(2,0);
	ToolbarEnable(3,0);  
	ToolbarEnable(4,0);  
	Toolbar("Go",0x3ff);
    
end;





''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Start%()
	var CommandLine$;
	var Extras$;
    var FixationArg$;
	var Stim$:="";
    var stimSpec$;
    var dist1Spec$;
    var Opener$;
    
    
    SampleStart(0); 'Start sampling now
    'endif;
    
	' Set Sequencer Variable #3 based on juicer type 
    SetJuicerSequencerVariable%();
    ' Clear any trigger bits on digout lines.
    SafeSampleKey("0");
    
    CommandLine$ := "cmd /c " + GetBinDir$(1) + "remote.exe 127.0.0.1 7000 beat -p 2 -i 3 -g 100 -P 10000"; 
    PrintLog(CommandLine$+"\n");
    StimHandle% := ProgRun(CommandLine$,1);
    if StimHandle% <0 then 
        Message("Could not start stimulus."); 
        halt; 
    endif
	
	ToolbarEnable(2,1);  'enable sample stop
	ToolbarEnable(1,0);  'disable sample start
	ToolbarEnable(3,1);  'this button is not used
	ToolbarEnable(4,1);  'enable Quit
	View(DataWindow%);
	Yield(2);
    SafeSampleKey("S");
    return 1;
end;



''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Stop%()
	' Disable idle process func
	ToolbarSet(0,"");  
    
    'Allow quit
    ToolbarEnable(7,1);
    
	' Tell stim app to shut down
	SafeSampleKey("Q");
	Yield(.1);
	SampleStop();
    
	ProgKill(StimHandle%);
	while ProgStatus(StimHandle%) > 0 do
		Yield();
	wend
    
    
end;

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Reward%()
    DefaultReward();
    'No sample text, just use 'R' from keyboard channel
	return 1;
end;

