' $Id$
' Update 11/8/11 Jeff, includes multi-juicer updates

const tunCVSID$ := "$Id$";




' Hello again

#include "../../Spike2Util/ChannelUtilities.s2s"
#include "../../Spike2Util/UsreyUtil.s2s"
#include "../../Spike2Util/LogUtilities.s2s"
#include "../../Spike2Util/MiscUtilities.s2s"
#include "UsreyDAQ.s2s"
#include "TuningDialogs.s2s"
#include "UsreyGratings.s2s"
#include "UsreyFixationPoint.s2s"



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' Tuning Curve script START
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''


' Overall script control vars
var Pause% := 0;
var UseTwo1401s% := 0;

' Channel numbers and handles
var StimHandle%;			' handle for stimulus application
var StimHandleSlave%;			' handle for stimulus application
var DataWindow%;		' 
var XChannel%;
var YChannel%;

var FrameChannel%;
var FrameSlaveChannel%;
var FixationPointChannel%;
var StimChannel%;
var StimChangeChannel%;
var ReadyChannel%;
var ReadySlaveChannel%;
var FixationPointSlaveChannel%;
var StimSlaveChannel%;
var DigitalLaserChannel%;
var OptoCopyChannel%;
var SequencerPeriodMS;
var ButtonChannel%;
var ButtonPort%;

' xy windows for plotting (TuningWindow) and PSTH. 
var TuningWindow%[16];	' one for each wavemark channel
var PSTHWindow%[16];    ' used for f1 and f2. Will be made invisible when in use. 

' XY window stuff
var XYWindow%;			' 
var iStimChannel%;	' channel number for stimulus in xy window
var iStimWindowChannel%;' channel number for stimulus window in xy window
var iMonitorChannel%;	' channel number for monitor position display in xy window
var XYDotSize%[200];  'holds size of each dot for XY coordinate plot
var XYDataCount%[200];  'holds number of presentations at each XY coordinate
var XYSpikeRate[200];  'hold cumulative "rate" ( = rate on trial 1 + rate on trial 2 ...) at each XY coordinate
var plotF0Ch% := 1;  'hard code; the first channel is the F0 channel
var plotF0MeanCh%;   'the remainder of these channels will be assigned in InitializeWindows as needed
var plotF1Ch%;
var plotF1MeanCh%;
var plotF2Ch%;
var plotF2MeanCh%;

' Display stuff
var FixWindowX[36],FixWindowY[36];	' points for displaying fixation window in xy view
var windowX[36], windowY[36];

' dummy vars
var iScript%;


var tNow:=0;		' latest time for which there are values recorded. Used in IdleProcessing
var tLast:=-1;		' last time we checked for a trigger. 
var xEye, yEye;		' eye positions
var tLastUpdate:=-1;	' last time view was updated
var vTrigger;		' set by NextTime to indicate trigger transition
var tStateStart:=-1;	' time that present state started. Used to measure wait time, fixation time, etc. 
var tLastTrigger:=-1;	' last trigger time. New triggers have to be greater than this
var tTrigger:=-1;	' temp var for newly discovered trigger times
var tStimOn:=-1;	' time that stim was turned on. Used to measure spike rates 
var tStimSequence := -1;    ' time that stim sequence started; followed by pulses on frame channels
var tInterTrialTime := 0;	' Time spent waiting between trials (i.e. after screen is blank, but before fix point is presented)
'var iHoldCount% := 0;	' Counter of how many times we progress through the hold fixation state in the maintainence loop. Used to decide if "time out" is required. 
var tRise, tFall;
var tKludge := 0.06;    ' Add to Fixation time to account for stim sequence. Ugly hack, admittedly, but one does what one must. 


'button stuff
var button1Press;
var button2Press;
var button1Release;
var button2Release;
var button1Thresh := 1.1;  'crossing level (downwards) for button 1, this is LEFT button
var button2Thresh := 2.0;  'crossing level (upwards) for button 2, this is RIGHT button
var buttonHysteresis := 0.05; 'how much noise we're allowing in the steady state voltage level; this may be high
var buttonMinTime := 0.005;  'five millisecond minimum
var buttonTime;  'the time of the most recent button event
var buttonStatus%;  'if 0, all buttons up, if 1, LEFT button currently pressed, if 2, RIGHT button currently pressed
var buttonDuringXHair%;
var buttonDuringSequence%;
var buttonError%;
var tButtonStart;   ' start time on button check

' Constants for states
const stateStartTrial%:=0;		' Start trial state
const stateWaitForFixPtOn%:=1;		' Waiting for fixation point return trigger (on)
const stateWaitForBlank%:=2;		' Waiting for fixation point return trigger (off)
const stateWaitForStimOn%:=3;		' Wait for stimulus return trigger (on)
const stateWaitForStimOff%:=4;		' Wait for stimulus return trigger (off)
const stateWaitForAcquisition%:=5;	' Waiting for subject to acquire fixation point
const stateHoldFixation%:=6;		' Holding fixation point
const stateAbort%:=7;			' Failed trial state
const stateMaintainFixation%:=8;	' Maintaining fixation (stim off period)
const stateInterTrialInterval%:=9;	' time out after failed trial
const stateVSGWait%:=10;		' wait for vsg to send ready signal #1
const stateVSGWaitConfirm%:=11;		' wait for vsg to send ready signal #2
const stateTrialCompleted%:=12;		' trial has been completed successfully
const stateDone%:=13;	
const stateWaitForStimTrigger% := 14; ' Rising edge indicating start of stim sequence
const stateWaitForStimOffDSS%:=15;		' Wait for stimulus return trigger (off) during DSS sequence
const stateInterTrialIntervalFixAlreadyUp%:=16;  'use intertrial interval after giving fixation reward in maintain fixation mode
const stateWaitStimulusOnsetDelay%:=17;  'if there is a stimulus onset delay, wait for the correct time
const stateStartOpto%:=18;
const stateWaitOptoPrestim%:=19;
const stateCheckTurnOnOpto%:=20;
const stateCheckTurnOffOpto%:=21;
const stateTurnOffOpto%:=22;
const stateWaitOptoPoststim%:=23;
const statePulsedOpto%:=24;
const stateWaitPulsedOpto%:=25;
const stateRequestStimulus%:=26;
var iState% := stateVSGWait%;	' present state

var nTrialsStarted%:=0;
var nTrialsCompleted%:=0;
var nTrialsAborted% :=0;		' 

var tic;  'Set a tick value equal to the duration of one clock tick in seconds, used to prevent finding
          'the same "pulse" twice
var pulseFound%;
var pulseFoundSlave%;
var tOpt;

'variables for reading tuning files
var tunFileLen%;
var tun1FileLen%;
var tun2FileLen%;

' Init logging
LogInit(1);

' Check if always looking flag is set. If so, issue a warning. 
if tunAlwaysLooking% = 1 then
    if Query("Always looking is SET. Unset?") = 1 then
        tunAlwaysLooking% := 0;
    endif
endif


' run parameters script....
tunContext$ := tunContextDAQ$;
tunType$ := tunTypeNone$;

GetTuningCurveScriptParameters();
iScript% := TuningCurveScriptDialog%();
if iScript% = 1 then
	if tunType$ = tunTypeNone$ then
		LogInfo("No tuning type selected, exit gracefully\n");
		Halt;
	else
		LogInfo("Tuning type \"" + tunType$ + "\" selected, proceed with DAQ. DoRivalry = " + str$(tunDoRivalry%));
	endif;
else
	LogInfo("User cancel - exit gracefully\n");
	Halt;
endif;


' When TF/CRG curve, don't do f1 and f2. 
' Also Dots. Also Stationary
if tunType$ = tunTypeTemporal$ or tunType$ = tunTypeCRG$ or tunType$ = tunTypeDots$ or tunSetStationary% = 1 then
    tunDoF12% := 0;
endif

' Read in CRG sequence file (SEQ) if doing contrast reversing grating, get length, make sure it's kosher
if tunType$ = tunTypeCRG$ then
    'Getting sequence lengths, number of flips, checking files against each other, if two
    LogStatus("Check Seq File", tunCRGSeqFile$);
    tunCRGNSeq1% := CheckSeqFile%(tunCRGSeqFile$,tunCRGNFlips1%);
    if tunCRGNSeq1% < 0 then
        Message("ERROR!|Cannot open seq file " + tunCRGSeqFile$);
        halt;
    endif
    
    if tunType1$ = tunTypeCRG$ then  'If secondary grating is CRG as well, read second grating
        tunCRGNSeq2% := CheckSeqFile%(tunCRGSeqFile2$,tunCRGNFlips2%);
        if tunCRGNSeq2% < 0 then
            Message("ERROR!|Cannot open seq file " + tunCRGSeqFile2$);
            halt;
        endif
        if tunCRGNSeq1% <> tunCRGNSeq2% then
            Message("ERROR!|The number of sequences must be the same in each file!");
            halt;
        endif;
        if tunCRGNFlips1% <> tunCRGNFlips2% then
            Message("ERROR!|The number of flips must be the same in each file!");
            halt;
        endif
        'if there is a CRG on both screens, set tunFixationDuration to 0; used in Idle processing to determine
        'when to advance the stimulus, don't want this value to interfere if it's not being used.
        tunFixationDuration := 0;   
    endif;
    
    'Calculate duration of stimulus
    tunCRGSecsPerSeq := tunCRGFramesPerFlip%*tunCRGNFlips1%/dataScreenHz;
    'printlog("duration of CRG stim is %f seconds\n",tunCRGSecsPerSeq);
    
    

endif;



' Assign channel numbers for eye X,Y and trigger. 
'here are old values
'XChannel% := 21;
'YChannel% := 22;
'FixationPointChannel% := 24;
'StimChannel% := 25;
'ReadyChannel% := 27;            ' Look for ready signal on port 2 (same as fixpt). 
'FixationPointSlaveChannel% := 28;
'StimSlaveChannel% := 29;
'FrameChannel% := 19;
'FrameSlaveChannel% := 20;
'ButtonChannel% := 23;

XChannel% := 25;
YChannel% := 26;

' djs 9-18-14 renumber these channels - save this stanza in case the extracts suffer....
'FixationPointChannel% := 28;
'StimChannel% := 29;
'ReadyChannel% := 33;            ' Look for ready signal on port 2 (same as fixpt). 
'ReadySlaveChannel% := 38;
'FixationPointSlaveChannel% := 34;
'StimSlaveChannel% := 35;
'FrameChannel% := 36;
'FrameSlaveChannel% := 37;

ReadyChannel% := 40;
FrameChannel% := 41;
FixationPointChannel% := 42;
StimChannel% := 43;
ReadySlaveChannel% := 44;
FrameSlaveChannel% := 45;
FixationPointSlaveChannel% := 46;
StimSlaveChannel% := 47;
DigitalLaserChannel% := 48;  'is 32 on Acute tuning, but let's not shove it in the midst of other stuff
OptoCopyChannel% := 49;

ExcludedChans%[0] := 25;  'XChannel is lowest non-electrode channel used by this function
ExcludedChans%[1] := 49;  'OptoCopyChannel% is highest non-electrode channel used by this function  


' end djs 9-18-14

ButtonChannel% := 27;
ButtonPort% := 5;  'This appears to be correct

' Fetch electrode information. 
if UsePlexon% = 1 or JoePlexon1% = 1 or JoePlexon2% = 1 then
    UseTwo1401s% := 1;
else
    UseTwo1401s% := 0;
endif;

docase
case UsePlexon% = 1 then
    tunNWavemarks% := 13;  '13 wavemarks on the micro for plexon
    tunNContinuous% := 0;  'no continuous on the micro for plexon
    var i%;
    for i% := 0 to 12 do
        tunWavemarkPorts%[i%] := i%;
    next;
case UsePlexon7WM15CN% = 1 then 
    tunNWavemarks% := 7;  '7 wavemarks
    tunNContinuous% := 15;  '15 continuous
    for i% := 0 to 7 do
        tunWavemarkPorts%[i%] := i%;
    next;
else
    tunNWavemarks% := GetWavemarkPorts%(tunWavemarkPorts%[]);
    tunNContinuous% := GetContinuousPorts%(tunContinuousPorts%[]);
endcase;


''Create sampling configuration
'CreateSampleConfiguration();
'
'
'' Get display windows ready
'InitializeWindows();
'
'tic := View(DataWindow%).BinSize(ReadyChannel%);
'
'' Prepare the toolbar buttons
'InitializeToolbar();



'If we are not linking the two 1401s together, just use the standard order of operations:
'1) create sampling configuration, 2) Initialize windows, 3) Initialize/run toolbar.
'However, if we are linking the 1401s we have to do this in a different order, because we have to open up the second
'instance of Spike 2 BEFORE setting up the sampling configuration/windows on the first instance.  Doing this in the
'wrong order results in a non-fatal error in the second Spike2 instance indicating that the file which is preparing
'to be recorded in the first instance cannot be accessed, despite no explicit attempt to access any such thing.
'Hence, for the dual-1401 setups, we first initialize the toolbar, which has a specialty button "Start Plexon".  StartPlexon%()
'launches the second instance and the associated script, and both scripts move forward independently to create their own
'sampling configuration, initialize their own windows and are ready to have sampling started.  Note well that sampling
'must be started on the POWER 1401/SLAVE 1401 (the second, non-dominant instance of Spike2) FIRST and on the 
'MICRO 1401/MASTER 1401 (the first,  dominant instance of Spike 2) SECOND.  Starting sampling on the Micro will run 
'the VSG program (Fixstim) which gives the sampling trigger and sets the experiment in motion.
if UseTwo1401s% = 0 then
    CreateSampleConfiguration();

    ' Get display windows ready
    InitializeWindows();
    
    tic := View(DataWindow%).BinSize(ReadyChannel%);
    
    ' Prepare the toolbar buttons
    InitializeToolbar();
else
    InitializeToolbar();
endif;




'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' Tuning Curve script END
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''



func IdleProcessing%()
	var iStatus% := 1;	
    var xval;
    var yval;
    var xind%;
    var yind%;
    
	tNow := View(DataWindow%).MaxTime();
    
    ' First time through (tLast<0) just update tLast. Crosstalk on vsg dig outputs leads to erroneous
    ' triggers. Maybe this will help. 
    if tLast < 0 then
        tLast := 1;
        return 1;
    endif
    
    
	xEye := View(DataWindow%).ChanMeasure(XChannel%,2,tNow-.006,tNow-.001)*DegreesPerVoltX;
	yEye := View(DataWindow%).ChanMeasure(YChannel%,2,tNow-.006,tNow-.001)*DegreesPerVoltY;

	' Don't update display every time....
	if tNow-tLastUpdate > .005 then
		View(XYWindow%).XYAddData(1,xEye,yEye);
		tLastUpdate := tNow;
        'if we're collecting a rivalry button, get button status and time here
        'OK, so the amazing thing is that for as complicated as this code is, the outputs ARE COMPLETELY UNUSED.  100%.  So until that changes, let's not go through the CPU time to analyze the button channel every 5 ms. -jj 9/22/16
        'if tunButtonCollect% = 1 then
        '    buttonError% := WhichButton%(tButtonStart,tNow,buttonStatus%,buttonTime);
        '    if buttonError% = -1 then
        '        FlushButton(tButtonStart,tNow,buttonStatus%,buttonTime);  'flush out all button events on error
        '    endif;
        'endif;
	endif

	docase 
    case iState% = stateVSGWait% then
        ' Waiting for VSG to indicate it is ready. The indication is a pulse (up, then down, 1 frame apart) on port 6.
        'if View(DataWindow%).FindPulseUp%(ReadyChannel%, -1, tRise, tFall) = 1 then
        pulseFound% := View(DataWindow%).FindPulseUp%(ReadyChannel%, tLastTrigger+tic, tRise, tFall);
        
        if tunDoRivalry% = 0 then
            if pulseFound% = 1 then
                LogStatus("VSGWait", "Got Ready Pulse from VSG at " + str$(tRise));
                Yield(1.0);
                tLastTrigger := tFall;
                ChangeStateTo(stateStartTrial%, tFall);
            else
                if pulseFound% = 0 then  'if a (short) "false" trigger is found, update tLastTrigger so we don't see it again
                    LogStatus("VSGWait", "Got FALSE Ready Pulse from VSG at " + str$(tRise));
                    tLastTrigger := tFall;
                endif;
            endif;
        else
            pulseFoundSlave% := View(DataWindow%).FindPulseUp%(ReadySlaveChannel%, tLastTrigger+tic, tRise, tFall);
            if pulseFound% = 1 and pulseFoundSlave% = 1 then
                LogStatus("VSGWait", "Got SLAVE Ready Pulse from VSG at " + str$(tRise));
                Yield(1.0);
                tLastTrigger := tFall;
                ChangeStateTo(stateStartTrial%, tFall);
            else
                ' TODO - do this for slave also
                if pulseFound% = 0 then  'if a (short) "false" trigger is found, update tLastTrigger so we don't see it again
                    LogStatus("VSGWait", "Got FALSE Ready Pulse from VSG at " + str$(tRise));
                    tLastTrigger := tFall;
                endif;
            endif;
        endif

    case iState% = stateStartTrial% then

        ' Start trial. Put up fixation point.
        LogStatus("StartTrial", "Request fixpt");
        SafeSampleKey("F");
        ChangeStateTo(stateWaitForFixPtOn%, tNow);
        
    
    case iState% = stateWaitForFixPtOn% then
        
        ' DJS 2015-02-12 Change from tLast to tStateStart.
        ' Attempting to fix bug where the on trigger for fixpt is not found.
        if View(DataWindow%).FindRisingEdge%(FixationPointChannel%, tStateStart, tTrigger) = 0 then
            ' Fixation point is up
            LogStatus("WaitForFixPtOn", "Fixpt on at " + str$(tTrigger) + "\n");
            tLastTrigger := tTrigger;
            ChangeStateTo(stateWaitForAcquisition%, tTrigger);
            DrawStim(1);	' actually this draws the location of the fixpt.
'        else
 '           LogStatus("WaitForFixPtOn", "Waiting at " + str$(tLast));
        endif

    case iState% = stateWaitForAcquisition% then

        ' Waiting for eye to fall inside of fixation window
        if Looking%(xEye, yEye) = 1 then
            if tunStimulusOnsetDelay = 0 then
                'LogStatus("WaitForAcquisition", "Eye in fixation window; request stim");
                'docase
                'case TunType$ = tunTypeBoxODonuts$ or TunType$ = tunTypeCRG$ or TunType$ = tunTypeXYPos$ then
                '    GetPlotXYCoord(nTrialsCompleted%,xval,yval,xind%,yind%);  'fill xval, yval
                '    SampleText("T," + str$(xval) + ",T2," + str$(yval));  'Just a guess at what will work
                'else
                '    SampleText("T," + str$(GetPlotXCoord(nTrialsCompleted%)));
                'endcase;
                
                'SafeSampleKey("S");  'request stimulus
                'if tunType$ = tunTypeDSS$ and tunDSSCurrPeriod% = 0 then  'initialize DSS stimulus if necessary
                '    InitializeDSSTrial(tNow);
                'endif;
                ''iHoldCount% := 0;  'disimplemented
                'ChangeStateTo(stateWaitForStimTrigger%, tNow);
                LogStatus("WaitForAcquisition", "Eye in fixation window; checking opto status");
                ChangeStateTo(stateCheckTurnOnOpto%, tNow);
                
            else
                LogStatus("WaitForAcquisition", "Eye in fixation window; wait through onset delay");
                ChangeStateTo(stateWaitStimulusOnsetDelay%, tNow);
            endif;
        else 
            if tNow - tStateStart > tunAcquisitionTime then
                ' failed to acquire target. 
                tInterTrialTime := tunAcqFailTime;
                LogStatus("WaitForAcquisition", "Failed.");
                ChangeStateTo(stateAbort%, tNow);
            endif
        endif
        
        
    case iState% = stateWaitStimulusOnsetDelay% then
        'make sure eye stays in fixation window
        if Looking%(xEye, yEye) = 1 then
            'if it's time to start the stimulus
            if tNow - tStateStart > tunStimulusOnsetDelay then
                'LogStatus("WaitStimulusOnsetDelay", "Eye in fixation window, onset delay complete; request stim");
                'docase
                'case TunType$ = tunTypeBoxODonuts$ or TunType$ = tunTypeCRG$ or TunType$ = tunTypeXYPos$ then
                '    GetPlotXYCoord(nTrialsCompleted%,xval,yval,xind%,yind%);  'fill xval, yval
                '    SampleText("T," + str$(xval) + ",T2," + str$(yval));  'Just a guess at what will work
                'else
                '    SampleText("T," + str$(GetPlotXCoord(nTrialsCompleted%)));
                'endcase;
                ' 
                'SafeSampleKey("S");  'request stimulus
                'if tunType$ = tunTypeDSS$ and tunDSSCurrPeriod% = 0 then  'initialize DSS stimulus if necessary
                '    InitializeDSSTrial(tNow);
                'endif;
                ''iHoldCount% := 0;  'disimplemented
                'ChangeStateTo(stateWaitForStimTrigger%, tNow);
                LogStatus("WaitForAcquisition", "Eye in fixation window; checking opto status");
                ChangeStateTo(stateCheckTurnOnOpto%, tNow);
            endif;
        else 
            ' failed to hold fixation through onset delay 
            tInterTrialTime := tunAcqFailTime;
            LogStatus("WaitStimulusOnsetDelay", "Failed to maintain fixation through delay.");
            ChangeStateTo(stateAbort%, tNow);
        endif
        
    case iState% = stateCheckTurnOnOpto% then
        docase
        case tunDoOpto% = 0 then 'if this is not an opto trial, just start it
            ChangeStateTo(stateRequestStimulus%, tNow);
            printlog("Not an opto trial, doOpto = %d, optoState = %d, time = %f\n",tunDoOpto%,tunOptoState%,tNow);
        case tunOptoUsePulse% = 1 and tunOptoState% = 0 then 'if this is a pulsed opto scenario, but not an opto trial, just start it
            'This is the same as the above step, separated to make the logic of the case statement easier
            ChangeStateTo(stateRequestStimulus%, tNow);
            printlog("Not an opto trial, doOpto = %d, optoState = %d, time = %f\n",tunDoOpto%,tunOptoState%,tNow);
        case tunOptoUsePulse% = 1 and tunOptoState% = 1 then  'it is a pulsed opto trial, the sequencer will time this
            ChangeStateTo(statePulsedOpto%,tNow);
        case tunOptoStaysOn% = 1 and (nTrialsCompleted% mod (tunNAdvances%+1)) <> 0 then 'this is for when we're keeping the opto on and it's mid block
            ChangeStateTo(stateRequestStimulus%, tNow);
            printlog("Opto is already on, OptoStaysOn = %d, TrialsComplete = %d, time = %f\n",tunOptoStaysOn%,(nTrialsCompleted% mod (tunNAdvances%+1)),tNow);
        else 'otherwise it is a wraparound opto trial and we need to turn opto on
            ChangeStateTo(stateStartOpto%, tNow);
            printlog("Turning Opto On at time = %f\n",tNow);
        endcase
        
        
    case iState% = stateStartOpto% then
        if tunOptoState% = 1 then 'this is an opto-on trial
            SafeSampleKey("O");  'turn on opto
            tOpt := View(DataWindow%).MaxTime();
            'printlog("OptoOn at %f\n",tOpt);
            SampleText("OptoOn",tOpt);
        else 'this is an opto-off trial
            SafeSampleKey("N");  'don't turn on opto
            tOpt := View(DataWindow%).MaxTime();
            'printlog("OptoOn at %f\n",tOpt);
            SampleText("NoOpto",tOpt);
        endif;
        
        ChangeStateTo(stateWaitOptoPrestim%, tNow);
        
        
    case iState% = stateWaitOptoPrestim% then
        if tNow > tStateStart + tunPreStimOptoTime then
            ChangeStateTo(stateRequestStimulus%, tNow);
        endif;      
        
        
    case iState% = statePulsedOpto% then
        SafeSampleKey("P");  'start pulsed opto, the whole sequence is controlled by the sequencer, this does the "S" implicitly
        tOpt := View(DataWindow%).MaxTime();
        SampleText("T," + str$(GetPlotXCoord(nTrialsCompleted%)),tOpt);
        printlog("Started opto trial at %f\n",tOpt);
        'ChangeStateTo(stateWaitPulsedOpto%, tOpt);
        ChangeStateTo(stateWaitForStimTrigger%, tOpt);
        
        
'    case iState% = stateWaitPulsedOpto% then 'wait for sequencer-controlled timing to complete
'        if tNow > tStateStart + tunStimulusDuration + 0.1 then 'wait an extra tenth of a second just in case
'            ChangeStateTo(stateTrialCompleted%,tNow);
'            'the "X" is not necessary as the pulsed opto sequence does the stimulus-off.  But maybe somebody someday will want to SEE the "X"...can uncomment if so
'            'SafeSampleKey("X"); 
'            'Advance, this we DO have to do
'            SafeSampleKey("a");
'            nTrialsCompleted% += 1;  'trial is complete
'            SampleSeqVar(6,tunOptoNPulses%);  'reset number of pulses, otherwise bad stuff happens on trial #2
'            printlog("Completed opto trial at %f\n",tNow);
'        endif;        
        
        
    case iState% = stateRequestStimulus% then

        ' Start trial. Put up stimulus.
        LogStatus("StartTrial", "Request stimulus");
        docase
        case TunType$ = tunTypeBoxODonuts$ or TunType$ = tunTypeCRG$ or TunType$ = tunTypeXYPos$ or (tunType$ = tunTypeContrast$ and tunContrastDualScreenCombo% = 1) or (tunType$ = tunTypeArea$ and tunAreaDualScreenCombo% = 1) then
            GetPlotXYCoord(nTrialsCompleted%,xval,yval,xind%,yind%);  'fill xval, yval
            SampleText("T," + str$(xval) + ",T2," + str$(yval));  'Just a guess at what will work
        else
            SampleText("T," + str$(GetPlotXCoord(nTrialsCompleted%)));
        endcase;
         
        SafeSampleKey("S");  'request stimulus
        if tunType$ = tunTypeDSS$ and tunDSSCurrPeriod% = 0 then  'initialize DSS stimulus if necessary
            InitializeDSSTrial(tNow);
        endif;
        'iHoldCount% := 0;  'disimplemented   
        ChangeStateTo(stateWaitForStimTrigger%, tNow);        
        
    case iState% = stateWaitForStimTrigger% then

        ' DJS 2015-02-16 Change from tLast to tStateStart.
        ' Attempting to fix bug where the on trigger for fixpt is not found.
        if View(DataWindow%).FindRisingEdge%(StimChannel%, tStateStart, tTrigger) = 0 then
            ' Fixation point is up
            LogStatus("WaitForStimTrigger", "Stim sequence started at " + str$(tTrigger));
            tStimOn := tTrigger;
            tStimSequence := tTrigger;      ' TODO remove tStimOn ref above - see stateWaitForStimOn
            tLastTrigger := tTrigger;
            ChangeStateTo(stateHoldFixation%, tTrigger);
            
        endif

        
    case iState% = stateWaitForStimOn% then
        
        ' Starting from tStimSequence, look for pulses in FrameChannel% and FrameSlaveChannel%
        LogStatus("WaitForStimOn", "NOT IMPLEMENTED!");
        
    case iState% = stateAbort% then

        ' Signal "X" turns off fixpt and stimulus. The next state 'stateWaitForBlank' only checks for 
        ' fixpt off. 
        docase
        case tunOptoUsePulse% = 1 and tunOptoState% = 1 then  'it is a pulsed opto trial
            'on a pulsed opto abort, we need to turn off the laser and break out of the opto loop
            SampleKey("B");  'NOT SafeSampleKey - sequencer is in use and we're killing it anyway, by design
            SafeSampleKey("X");  'just turn off stimulus, follow up to get fixation channel down
        case tunDoOpto% = 1 and tunOptoUsePulse% = 0 then  'any other opto trial, kill opto on abort
            if tunOptoState% = 1 then
                SafeSampleKey("o");  'turn it off
                tOpt := View(DataWindow%).MaxTime();
                'printlog("OptoOff at %f\n",tOpt);
                SampleText("OptoOff",tOpt);
            else
                SafeSampleKey("n");  'turn it off
                tOpt := View(DataWindow%).MaxTime();
                'printlog("OptoOff at %f\n",tOpt);
                SampleText("NoOptoSoNoOff",tOpt);
            endif;
            SafeSampleKey("X");  'just turn off stimulus
        else
            SafeSampleKey("X");  'just turn off stimulus
        endcase;
        ChangeStateTo(stateWaitForBlank%, tNow);

    case iState% = stateWaitForBlank% then

        ' we just wait for fix point off signal in this case. 
        ' DJS 2015-02-16 Change from tLast to tStateStart.
        ' Attempting to fix bug where the on trigger for fixpt/stim/off is not found.

        if View(DataWindow%).FindFallingEdge%(FixationPointChannel%, tStateStart, tTrigger) = 1 then
            ' Fixation point is off
            tLastTrigger := tTrigger;
            ChangeStateTo(stateInterTrialInterval%, tTrigger);
            DrawStim(0);	' actually this draws the location of the fixpt.
        endif

    case iState% = stateInterTrialInterval% then

        if tNow - tStateStart > tInterTrialTime then

            ChangeStateTo(stateStartTrial%, tNow);
            
        endif
        
        
    case iState% = stateInterTrialIntervalFixAlreadyUp% then

        if tNow - tStateStart > tunStdInterTrialTime then
'            SafeSampleKey("S");  'request stimulus
'            ChangeStateTo(stateWaitForStimTrigger%, tNow);
            
            'going to stateWaitForAcqusition allows opto to happen
            ChangeStateTo(stateWaitForAcquisition%, tNow-tunAcquisitionTime);  'do not allow acquisition window, if animal is not fixating during maintain, this is an abort
        endif    
        

    case iState% = stateHoldFixation% then

        if Looking%(xEye, yEye) = 0 then
            
            LogStatus("WaitForFixation", "Fixation broken, aborting trial.");
            'if iHoldCount% = 0 then     'disimplemented
            '    tInterTrialTime := tunTimeOutTime;
            'else
            '    tInterTrialTime := tunHoldFailTime;
            'endif
            tInterTrialTime := tunHoldFailTime; 'replaces disimplemented code directly above
            SampleText("-");
            ChangeStateTo(stateAbort%, tNow);

        else 
            'tunCRGSecsPerSeq will be 0 unless there is a CRG; tunFixationDuration will be 0 if both screens are CRG
            if tNow - tStateStart > tunFixationDuration + tKludge and tNow - tStateStart > tunCRGSecsPerSeq + tKludge then  

                'iHoldCount% += 1;  'disimplemented

                ' turn off stimulus and advance it
                SampleText("+");
                LogStatus("HoldFixation", "Turn off and advance stimulus.");
                
                ' djs If NoMaintain was chosen, then turn EVERYTHING off (stim and fixpt) now.
                ' Otherwise just turn off stim.
                docase    
                case tunUseMaintainMode% = 1 or tunUseMaintainMode% = 2 then
                    SafeSampleKey("s");  'Turn off donut, also turn off core on danish
                case tunUseMaintainMode% >= 3 then
                    SafeSampleKey("v");  'Toggle donut only, will leave core on danish 
                else  'tunUseMaintainMode% is 0
                    SafeSampleKey("X");  'Turn off all
                endcase;
                
                Yield();
                
                ' Reward
                DefaultReward();
                
                ' Process Spikes
                if tunDoTuningHist% = 1 then
                    docase
                    case TunType$ = tunTypeBoxODonuts$ then
                        GetPlotXYCoord(nTrialsCompleted%,xval,yval,xind%,yind%);  'fill xval, yval
                        PlotSpikes2TunCurves(tStimOn, tNow, 1, xval, yind%);
                    case TunType$ = tunTypeCRG$ then
                        GetPlotXYCoord(nTrialsCompleted%,xval,yval,xind%,yind%);  'fill xval, yval
                        PlotSpikes(tStimOn, tNow, 1, yval, nTrialsCompleted%);  'yes, yval
                    case TunType$ = tunTypeXYPos$ then
                        GetPlotXYCoord(nTrialsCompleted%,xval,yval,xind%,yind%);  'fill xval, yval
                        PlotDots(tStimOn, tNow, xind%, yind%); 
                    else
                        'PlotSpikes(tStimOn, tNow, 1, GetPlotXCoord(nTrialsCompleted%), nTrialsCompleted%);
                        PlotSpikesAverage(tStimOn, tNow, 1, GetPlotXCoord(nTrialsCompleted%), nTrialsCompleted%, GetPlotXInd%(nTrialsCompleted%), tunNAdvances%);
                    endcase; 
                endif;
                

                ' Now wait until stim is off
                if tunType$ = tunTypeDSS$ then
                    ChangeStateTo(stateWaitForStimOffDSS%, tNow);  'must look at Fixation channel in this case
                else
                    ChangeStateTo(stateWaitForStimOff%, tNow);
                endif;
                
                
            else  'if fixation is maintained, and the stimulus is not over, and we are doing dynamic surround suppression...
                if tunType$ = tunTypeDSS$ and tNow > tunNextDSSTime then 'if it's time to do something
                    if tunDSSIsOn% = 1 then
                        'SafeSampleKey("s");  'turn donut off
                        SafeSampleKey("v");  'toggle donut off
                        tunDSSIsOn% := 0;  'reset
                        
                        'determine if it is time for a reward
                        'This will give reward after first, and every nth flash, (for last flash, reward will come when stimulus is turned off)
                        'if tunDSSFlashesUntilReward% = 0 or tunDSSCurrPeriod% = tunDSSNPeriods% then
                        if tunDSSFlashesUntilReward% = 0 then    
                            DefaultReward();
                            tunDSSFlashesUntilReward% := tunDSSNFlashesPerReward%-1;  'reset flashes count
                        else
                            tunDSSFlashesUntilReward% := tunDSSFlashesUntilReward% - 1;  'decrement flashes count
                        endif;
                        
                        'determine time of next change
                        tunNextDSSTime := tNow + tunDSSDuration; 'when we turn back on
                        tunDSSCurrPeriod% += 1;  'increment current period
                        'if there are any blanks, add more duration
                        while tunDSSFlashOrBlank%[tunDSSCurrPeriod%] = 0  and tunDSSCurrPeriod% < tunDSSNPeriods% do  '0 is blank
                            tunNextDSSTime := tunNextDSSTime + tunDSSDuration + tunDSSDuration;
                            tunDSSCurrPeriod% += 1;  'increment current period
                        wend

                    else 'if donut is currently off
                        if tunDSSCurrPeriod% = tunDSSNPeriods% then
                            tunFixationDuration := 0;  'Allow trial to finish
                            tunDSSCurrPeriod% := 0;  'Allow next trial to initialize
                        else 
                            'SafeSampleKey("S");  'turn donut on
                            SafeSampleKey("v");  'toggle donut on
                            tunDSSIsOn% := 1;  'reset
                            tunNextDSSTime := tNow + tunDSSDuration;
                        endif
                    endif                    
                    
                    
                endif
                
                
            endif

        endif

    case iState% = stateWaitForStimOff% then

        if tunOptoUsePulse% = 1 and tunOptoState% = 1 then  'it is a pulsed opto trial 
            if View(DataWindow%).FindFallingEdge%(StimChannel%, tLastTrigger, tTrigger) = 1 then  'needs to be tLastTrigger if pulsing opto
                ' Advance
                SafeSampleKey("a");
                
                tLastTrigger := tTrigger;
                ChangeStateTo(stateCheckTurnOffOpto%, tNow);
            else
                if tunType$ = tunTypeDanish$ and tunUseMaintainMode% >= 3 and View(DataWindow%).FindRisingEdge%(FrameChannel%, tLast, tTrigger) then
                    ' Advance, in specific case that we are doing danishes and maintaining the core - there will not be a falling edge on the stim channel in this case
                    SafeSampleKey("a");
                    
                    tLastTrigger := tTrigger;
                    ChangeStateTo(stateCheckTurnOffOpto%, tNow);
                endif
            endif
        else
            if View(DataWindow%).FindFallingEdge%(StimChannel%, tLast, tTrigger) = 1 then
                ' Advance
                SafeSampleKey("a");
                
                tLastTrigger := tTrigger;
                ChangeStateTo(stateCheckTurnOffOpto%, tNow);
            else
                if tunType$ = tunTypeDanish$ and tunUseMaintainMode% >= 3 and View(DataWindow%).FindRisingEdge%(FrameChannel%, tLast, tTrigger) then
                    ' Advance, in specific case that we are doing danishes and maintaining the core - there will not be a falling edge on the stim channel in this case
                    SafeSampleKey("a");
                    
                    tLastTrigger := tTrigger;
                    ChangeStateTo(stateCheckTurnOffOpto%, tNow);
                endif
            endif
        endif
        
    case iState% = stateWaitForStimOffDSS% then
        
        ' djs 2-16-2015 Modified to use tStateStart instead of tLast, hoping this will fix bug where 
        ' certain signals from vsg not being picked up by this script. 
        if View(DataWindow%).FindFallingEdge%(FixationPointChannel%, tStateStart, tTrigger) = 1 then
            ' Advance
            SafeSampleKey("a");

            tLastTrigger := tTrigger;
            ChangeStateTo(stateCheckTurnOffOpto%, tNow);
        endif   
        
        
    case iState% = stateCheckTurnOffOpto% then
        nTrialsCompleted% += 1;  'trial is complete, change of count here makes logic easier 
        docase
        case tunDoOpto% = 0 or (tunOptoState% = 0 and tunOptoUsePulse% = 1) then 'if this is not an opto trial, trial is complete
            ChangeStateTo(stateTrialCompleted%, tStateStart);
            printlog("Trial complete, Not an opto trial, doOpto = %d, optoState = %d, time = %f\n",tunDoOpto%,tunOptoState%,tStateStart);
        case tunOptoStaysOn% = 1 and (nTrialsCompleted% mod (tunNAdvances%+1)) <> 0 then 'this is for when we're keeping the opto on and it's mid block
            ChangeStateTo(stateTrialCompleted%, tStateStart);
            printlog("Opto is staying on, OptoStaysOn = %d, TrialsComplete = %d, time = %f\n",tunOptoStaysOn%,(nTrialsCompleted% mod (tunNAdvances%+1)),tStateStart);
        case tunOptoUsePulse% = 1 and tunOptoState% = 1 then  'it is a pulsed opto trial
            printlog("Trial complete, Pulsed opto trial, time = %f\n",tStateStart);
            ChangeStateTo(stateTrialCompleted%, tStateStart);
            SampleSeqVar(6,tunOptoNPulses%);  'reset number of pulses, otherwise bad stuff happens
        else 'otherwise it is an opto trial and we need to turn opto off
            ChangeStateTo(stateWaitOptoPoststim%, tStateStart);
            printlog("Turning Opto Off at time = %f\n",tStateStart);
        endcase
        
        
        
    case iState% = stateWaitOptoPoststim% then
        if tNow > tStateStart + tunPostStimOptoTime then
            ChangeStateTo(stateTurnOffOpto%, tNow);
        endif;
        
        
    case iState% = stateTurnOffOpto% then
        if tunOptoState% = 1 then
            SafeSampleKey("o");  'turn it off
            tOpt := View(DataWindow%).MaxTime();
            'printlog("OptoOff at %f\n",tOpt);
            SampleText("OptoOff",tOpt);
        else
            SafeSampleKey("n");  'turn it off
            tOpt := View(DataWindow%).MaxTime();
            'printlog("OptoOff at %f\n",tOpt);
            SampleText("NoOptoSoNoOff",tOpt);
        endif;
        
        ChangeStateTo(stateTrialCompleted%,tNow); 
        
        

    case iState% = stateTrialCompleted% then
        
        'nTrialsCompleted% += 1;  'now done above in stateCheckTurnOffOpto%
        printlog("number of trials completed is %d\n",nTrialsCompleted%);
		ToolbarText(str$(nTrialsCompleted%) + "/" + str$(tunNValues%) + " trials completed."); 
        docase
		case nTrialsCompleted% = tunNValues% then
            ' We're all done - appears to not reward on final trial.  How chintzy!
            ChangeStateTo(stateDone%, tNow);
            Stop%();
            iStatus% := 0;
        case (nTrialsCompleted% mod (tunNAdvances%+1)) = 0 then 'toggle tunOptoState at the end of a block, use interblock time
            if tunDoOpto% = 1 and dontToggleOpto% = 0 then
                tunOptoState% := 1-tunOptoState%;  'but only toggle if we're actually doing opto, and we haven't been told to not toggle opto
            endif;
            if tunUseMaintainMode% >= 1 then
                SafeSampleKey("X");  'turn everything off, fixation wasn't turned off previously because of maintain mode
            endif;
            tInterTrialTime := tunStdInterTrialTime + tunInterBlockTime;
            ChangeStateTo(stateInterTrialInterval%, tNow);  'at end of block, we do not maintain fixation, it will start again for next time
        else
            if tunUseMaintainMode% >= 1 then
                ChangeStateTo(stateMaintainFixation%, tNow);
            else
                'tInterTrialTime := tunMaintainFailTime;
                tInterTrialTime := tunStdInterTrialTime;
                ChangeStateTo(stateInterTrialInterval%, tNow);
            endif
        endcase
            
    case iState% = stateMaintainFixation% then

        if Looking%(xEye, yEye) = 0 then

            tInterTrialTime := tunMaintainFailTime;
    
            LogStatus("MaintainFixation", "Broken; aborting trial");
            ChangeStateTo(stateAbort%, tNow);

        else 
            if tNow - tStateStart > tunMaintainFixation then

                LogStatus("MaintainFixation", "success");
                
                if tunUseMaintainMode% = 2 or tunUseMaintainMode% = 4 then  'Only give juice if requested in original dialog
                    if JuicerType% = 1 then  'open-high juicer, dispense based on ms
                        DeliverReward();
                    else
                        if JuicerType% = 2 then  'open-low juicer, dispense based on number of hits
                            DeliverRewardNumber();
                        endif;
                    endif;
                endif;
                
                
                docase
                case TunType$ = tunTypeBoxODonuts$ or TunType$ = tunTypeCRG$ or TunType$ = tunTypeXYPos$ then
                    GetPlotXYCoord(nTrialsCompleted%,xval,yval,xind%,yind%);  'fill xval, yval
                    SampleText("T," + str$(xval) + ",T2," + str$(yval));  'Just a guess at what will work
                else
                    SampleText("T," + str$(GetPlotXCoord(nTrialsCompleted%)));
                endcase;
                
                
                if tunUseMaintainMode% = 2 or tunUseMaintainMode% = 4 then  'this will allow a "break" after giving a reward, uses intertrial interval
                    ChangeStateTo(stateInterTrialIntervalFixAlreadyUp%, tNow);                
                else  'if no reward, goes straight to next stimulus
'                    SafeSampleKey("S");                
'                    ChangeStateTo(stateWaitForStimTrigger%, tNow);
                    
                    'try going to acquisition step first, this allows opto to happen, also penalizes for fixation break after second reward
                    ChangeStateTo(stateWaitForAcquisition%, tNow-tunAcquisitionTime);  'do not allow acquisition window, if animal is not fixating during maintain, this is an abort
                endif;
                

            endif 
        endif

    else
        
        ' Unknown state!
        Message("Unknown state=" + str$(iState%));
        halt;

	endcase;

	tLast := tNow;
	return iStatus%;
end;


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' InitializeToolbar - prepare toolbar buttons. Note that the idle processing function (ToolbarSet(0, blah, blah)) is 
' not set here. That's done when the user hits the start button.
'
proc InitializeToolbar()

	View(App(8)).WindowVisible(0);	'Hide the standard sample bar
	ToolbarVisible(1);
    if UseTwo1401s% = 1 then
        ToolbarSet(1,"StartPlexon",StartPlexon%);
    else
        ToolbarSet(1,"Sample start",Start%);
    endif;
	ToolbarSet(2,"Sample stop", Stop%);
	ToolbarSet(3,"Juice", Juice%);
	ToolbarSet(4,"Pause stimuli",PauseStimuli%);
	ToolbarSet(5,"Resume stimuli",ResumeStimuli%);
    '	ToolbarSet(6,"Exp Parameters",AttentionScriptDialog%);
    ToolbarSet(6,"Select Wavemarks",SelectWavemarkDialog%);
	ToolbarSet(7,"Quit",Quit%);
	ToolbarEnable(2,0);
	ToolbarEnable(4,0);
	ToolbarEnable(5,0);
	Toolbar("Go",0x3ff);

end;




''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Looking%(EyePosX,EyePosY)
	'Determine if the eye position is within the fixation window
    if tunAlwaysLooking% = 1 then return 1; endif;
	if (Pow(EyePosX-FixationX,2) + Pow(EyePosY-FixationY,2)) <= Pow(WindowRadius,2) then return 1; else return 0; endif
end;

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Juice%()  'note that this function is only used for Toolbar-based juice delivery
    if JuicerType% = 1 then  'open-high juicer, dispense based on ms
        DeliverReward();
    else
        if JuicerType% = 2 then  'open-low juicer, dispense based on number of hits
            DeliverRewardNumber();
        endif;
    endif;
    return 1;
end;

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''



func GetPlotXCoord(nTrials%)  
    return tunValues[tunValuesIndices%[nTrials%]];
end;

func GetPlotXInd%(nTrials%)  
    return tunValuesIndices%[nTrials%];
end;

func GetPlotXYCoord(nTrials%,&xval,&yval,&xind%,&yind%)  'new for Box O' Donuts
    xval := tun1Values[tun1ValuesIndices%[nTrials%]];
    yval := tun2Values[tun2ValuesIndices%[nTrials%]];
    xind% := tun1ValuesIndices%[nTrials%];  'at time of writing, xind is not used (may as well put it in)
    yind% := tun2ValuesIndices%[nTrials%];  'but yind is used in PlotSpikes2TunCurves
end;


proc PlotDots(t1,t2,xind%,yind%)
    var rate;
    var count% := 1;
    var i%;
    var j%;
    var k%;
    var ind%;
    var maxdot;
    var temp[200];  'this holds the average
    'get index to which channel is current
    ind% := yind% + (xind%*(tunXYPosNYSteps%+1));
    'for i% := 0 to tunNWavemarks%-1 do ...for now I want this to work for one electrode before trying to do multiples
    rate := View(DataWindow%).Count(i%+1, t1, t2)/(t2-t1);
    printlog("Current rate is %f\n",rate);
    XYSpikeRate[ind%] += rate;  'add in the current rate
    XYDataCount%[ind%] += 1;   'increment the counter
    'now determine the dot size - make 0 = 0, make biggest dot = 50
    ArrConst(temp[],XYSpikeRate[]);  'fill temp with "rate"
    ArrDiv(temp[],XYDataCount%[]);   'divide by number of trials at each point to get actual rate, divide by zero should be OK and just give no change (so still 0)
    maxdot := temp[Max(temp)];  'get value of maximum rate
    if maxdot > 0 then
        ArrConst(XYDotSize%[],temp[]);  'put actual rate into dot size variable 
        ArrMul(XYDotSize%,50/maxdot);   'multiply by factor to make max rate = 50
        printlog("Dotsize is %f\n",XYDotSize%);
        for j% := 0 to tunXYPosNXSteps% do
            for k% := 0 to tunXYPosNYSteps% do
               ' View(TuningWindow%[i%]).XYDrawMode(count%+1,2,XYDotSize%[count%-1]);  'set size of dots to proper size, I'm not sure why channel has to be count+1...?
                count% += 1;
            next;
        next;
    endif;

    'end;
end;


proc PlotSpikes(t1, t2, vOnOff%, x, index%)
	var rate;
    var i%;
    var tSweep;
    var fftData[16];        ' size of this array should be same as number of bins!
    
 '   x := tunValues[tunValuesIndices%[nTrials%]];
 '   ind% := tunValuesIndices%[nTrials%];
    
	for i% := 0 to tunNWavemarks%-1 do
		rate := View(DataWindow%).Count(i%+1, t1, t2)/(t2-t1);
		if rate >= 0 then
			if vOnOff% = 1 then
				' this is signal
                'PrintLog("%d Count %f\n", i%, rate*(t2-t1));
				View(TuningWindow%[i%]).XYAddData(plotF0Ch%, x, rate);    ' channel 1 is data; channel 2 is background
			endif
			' NOTE: IGNORING BACKGROUND HERE FOR THE TIME BEING. 
	    endif 
        
        if tunDoF12% = 1 and vOnOff% = 1 then
            ' Process for each cycle of the stimulus. A single cycle of the stim takes 1/tf
			View(PSTHWindow%[i%]);
			Process(t1, t2, 1, 1);
			for tSweep := t1+1/tunTF to t2-1/tunTF step 1/tunTF do 
				Process(tSweep, tSweep+1/tunTF, 0, 1);
			next
			ArrConst(fftData[], View(PSTHWindow%[i%]).[]);
			ArrFFT(fftData[], 4); 
            tunF1Sum[i%][index%] += fftData[1];  'store sum of F1/F2
            tunF2Sum[i%][index%] += fftData[2];
            View(TuningWindow%[i%]).XYAddData(plotF1Ch%, x, fftData[1]);  'this is adding the actual value to the plot
            'View(TuningWindow%[i%]).XYAddData(plotF2Ch%, x, fftData[2]);  'Henry requested turning F2 off
            
        endif
        
	next
end;

proc PlotSpikesAverage(t1, t2, vOnOff%, x, index%, index2%, nAdvances%)
	var rate;
    var i%;
    var j%;
    var tSweep;
    var fftData[16];        ' size of this array should be same as number of bins!
    
 '   x := tunValues[tunValuesIndices%[nTrials%]];
 '   ind% := tunValuesIndices%[nTrials%];
    
	for i% := 0 to tunNWavemarks%-1 do
		rate := View(DataWindow%).Count(i%+1, t1, t2)/(t2-t1);
		if rate >= 0 then
			if vOnOff% = 1 then
				' this is signal
                'PrintLog("%d Count %f\n", i%, rate*(t2-t1));
				View(TuningWindow%[i%]).XYAddData(plotF0Ch%, x, rate);    ' channel 1 is data; channel 2 is background
			endif
            tunF0ActualSum[i%][index2%] += rate;  'store sum of rate
            tunF0Count%[i%][index2%] += 1;  'increment count
            View(TuningWindow%[i%]).XYDelete(plotF0MeanCh%);
            for j% := 0 to nAdvances% do
                if tunF0Count%[i%][j%] > 0 then  'don't try to do this before there is any data for a particular point
                    View(TuningWindow%[i%]).XYAddData(plotF0MeanCh%, tunValues[j%], tunF0ActualSum[i%][j%]/tunF0Count%[i%][j%]);  'this is adding the average value
                endif
            next;
			' NOTE: IGNORING BACKGROUND HERE FOR THE TIME BEING. 
	    endif 
        
        if tunDoF12% = 1 and vOnOff% = 1 then
            ' Process for each cycle of the stimulus. A single cycle of the stim takes 1/tf
			View(PSTHWindow%[i%]);
			Process(t1, t2, 1, 1);
			for tSweep := t1+1/tunTF to t2-1/tunTF step 1/tunTF do 
				Process(tSweep, tSweep+1/tunTF, 0, 1);
			next
			ArrConst(fftData[], View(PSTHWindow%[i%]).[]);
			ArrFFT(fftData[], 4); 
            'add actual value to plot
            View(TuningWindow%[i%]).XYAddData(plotF1Ch%, x, fftData[1]);  'this is adding the actual value to the plot
            'View(TuningWindow%[i%]).XYAddData(plotF2Ch%, x, fftData[2]);  'Henry requested turning F2 off
            tunF1Sum[i%][index%] += fftData[1];  'store value of F1/F2
            tunF2Sum[i%][index%] += fftData[2];
            tunF1ActualSum[i%][index2%] += fftData[1];  'store sum of F1/F2
            tunF2ActualSum[i%][index2%] += fftData[2];
            tunF1Count%[i%][index2%] += 1;  'increment count
            tunF2Count%[i%][index2%] += 1;
            View(TuningWindow%[i%]).XYDelete(plotF1MeanCh%);
            'View(TuningWindow%[i%]).XYDelete(plotF2MeanCh%);  'use for F2, currently disabled
            for j% := 0 to nAdvances% do
                if tunF1Count%[i%][j%] > 0 then  'don't try to do this before there is any data for a particular point
                    View(TuningWindow%[i%]).XYAddData(plotF1MeanCh%, tunValues[j%], tunF1ActualSum[i%][j%]/tunF1Count%[i%][j%]);  'this is adding the average value, but we need to make the other values "disappear"
                    'View(TuningWindow%[i%]).XYAddData(plotF2MeanCh%, tunValues[j%], tunF2ActualSum[i%][j%]/tunF2Count%[i%][j%]);  'this would be the average F2 if we turned it on
                endif
            next;
            
        endif
        
	next
end;


proc PlotSpikes2TunCurves(t1, t2, vOnOff%, x, yind%)
	var rate;
    var i%;
        
	for i% := 0 to tunNWavemarks%-1 do
		rate := View(DataWindow%).Count(i%+1, t1, t2)/(t2-t1);
		if rate >= 0 then
			if vOnOff% = 1 then  'This apparently allows us to not update if we call the update function...weird...no matter, as it's hard coded to 1 in the call.
				' this is signal
                'PrintLog("%d Count %f\n", i%, rate*(t2-t1));
				View(TuningWindow%[i%]).XYAddData(yind%+1, x, rate);    'will plot different-colored "lines" based on yind% (I hope), must add 1 to yind% because first chan in XYplot is 1, not 0
			endif
			' NOTE: IGNORING BACKGROUND HERE FOR THE TIME BEING. 
	    endif 
	next
end;




'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc ChangeStateTo(stateTo%, tStart)
	iState% := stateTo%;
	if tStart > 0 then tStateStart := tStart; endif;
end;


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func PauseStimuli%();
Pause% :=1;
ToolbarEnable(4,0);
ToolbarEnable(5,1);
return 1;
end
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func ResumeStimuli%();
Pause% :=0;
ToolbarEnable(4,1);
ToolbarEnable(5,0);
return 1;
end





proc InitializeWindows()
    var i%;
    var WindowStep;
    'var ch1%, ch2%;
    
    ' Get tf of stim
    tunTF := GetStimulusTF();
    
    ' Make spike2 use all of monitor 1
    View(App()).Window(0, 0, 100, 100, 1);
    
	'Open the data sampling window
    DataWindow% := FileNew(0,4);
    if DataWindow% < 0 then
        PrintLog("FileNew Error: %s\n", Error$(DataWindow%));
    endif

	Window(0,48,50,95);
    XRange(0, 30);
	View(DataWindow%).WindowVisible(1);
    
    'Inelegant hack - can't really do tuning histograms for DSS (no tuning), but don't want to interfere with dialog
    if tunType$ = tunTypeDSS$ then
        tunDoTuningHist% := 0;
    endif
    
    
	' open xy window to display tuning results
    if tunDoTuningHist% = 1 then
        if tunNWavemarks% > 0 then
            WindowStep := 100/tunNWavemarks%;
        endif
        for i% := 0 to tunNWavemarks%-1 do
            TuningWindow%[i%] := FileNew(12);
            Window(50, i%*WindowStep, 100, (i%+1)*WindowStep);
            ChanTitle$(0, "Spikes/s");
            TuningCurveLabels(tunWavemarkPorts%[i%]);
            plotF0MeanCh% := View(TuningWindow%[i%]).XYSetChan(0);   ' Used to plot f0 mean
            'XYColour(plotF0MeanCh%,17);  'don't change color
            XYDrawMode(plotF0MeanCh%,1,4);  'use circles for F0
            XYDrawMode(plotF0MeanCh%,2,15);  'make them bigger
            WindowVisible(1);
            
            ' Create psth window if f1 and f2 analysis needed
            if tunDoF12% = 1 then
                
                plotF1Ch% := View(TuningWindow%[i%]).XYSetChan(0);   ' Used to plot f1
                XYColour(plotF1Ch%,25);
                plotF2Ch% := View(TuningWindow%[i%]).XYSetChan(0);   ' used to plot f2
                XYColour(plotF2Ch%,30);
                plotF1MeanCh% := View(TuningWindow%[i%]).XYSetChan(0);   ' Used to plot f1 mean
                XYColour(plotF1MeanCh%,25);
                XYDrawMode(plotF1MeanCh%,1,6);  'use diamonds for F1
                XYDrawMode(plotF1MeanCh%,2,15);  'make them bigger
                XYJoin(plotF1MeanCh%,1);  'and connect the F1 lines
                plotF2MeanCh% := View(TuningWindow%[i%]).XYSetChan(0);   ' used to plot f2 mean
                XYColour(plotF2MeanCh%,30);
                XYDrawMode(plotF2MeanCh%,1,5);  'use triangles for F2
                XYDrawMode(plotF2MeanCh%,2,15);  'make them bigger
                LogStatus("InitializeWindows", "Channel " + str$(i%+1) + " " + str$(plotF1Ch%) + " " + str$(plotF2Ch%));
                PSTHWindow%[i%] := View(DataWindow%).SetPSTH(i%+1, 16, 1 /(tunTF*16), 0, 0, 3);
                View(PSTHWindow%[i%]).WindowVisible(0);
            endif        
        next
    endif;
    

	'Open an XY view to display eye position
	XYWindow% := FileNew(12);
	XRange(-30,30);
	YRange(-2,-30,30);
	XYDrawMode(0,5,0);
	WindowVisible(1);
	Window(0, 0, 50, 47);
	XYColour(1,16);
	XYSize(1,-1);


	'Calcuate the fixation window
	var index%;
	var twopi;
	twopi := 2.0*4.0*ATan(1.0);
	
	for index% := 0 to 35 do
		FixWindowX[index%] := FixationX + WindowRadius * Cos(index% * twopi/36.0);
		FixWindowY[index%] := FixationY + WindowRadius * Sin(index% * twopi/36.0);
	next;

	'Create a new channel in the XY view to display the fixation window
	iStimWindowChannel% := XYSetChan(0);
	XYColour(2,13);
	XYDrawMode(2,2,1);
	XYJoin(2,1);
	'Draw the fixation window
	XYAddData(2, FixWindowX[], FixWindowY[]);

	'Create a new channel in the XY view to display the fixation point
	iStimChannel% := XYSetChan(0);

	'Create a new channel in the XY view to show the monitor's location
	iMonitorChannel% := XYSetChan(0);
	XYColour(4,13);
	XYDrawMode(4,3,1);
	XYJoin(4,2);
	XYAddData(4,-9,-7);
	XYAddData(4,9,-7);
	XYAddData(4,9,7);
	XYAddData(4,-9,7);

end;

proc TuningCurveLabels(iport%)
    
    var i%;  'looping variables to set XY channels for XY position tuning plot
    var j%;
    var count%;
    
    var s$;
    s$ := "Port " + str$(iport%);
	docase
        
    case tunType$ = tunTypeDots$ then
        
        WindowTitle$("Dots, Orientation Tuning - " + s$);
        XUnits$("Orientation (degrees)");
        ChanTitle$(1, "Chan 1");
        XRange(tunDotsMinOrientation, tunDotsMaxOrientation);
        
    case tunType$ = tunTypeContrast$ then
        
        WindowTitle$("Contrast Tuning - " + s$);
        XUnits$("Contrast (%)");
        ChanTitle$(1, "Chan 1");
        XRange(tunContrastMinContrast, tunContrastMaxContrast);
        
    case tunType$ = tunTypeOrientation$ then
        
        WindowTitle$("Orientation Tuning - " + s$);
        XUnits$("Orientation (degrees)");
        ChanTitle$(1, "Chan 1");
        XRange(tunOriMinOrientation, tunOriMaxOrientation);
        
    case tunType$ = tunTypeSpatial$ then
        
        WindowTitle$("Spatial Frequency Tuning - " + s$);
        XUnits$("Spatial Frequency");
        ChanTitle$(1, "Chan 1");
        XRange(tunSpatialMinSF, tunSpatialMaxSF);
        
    case tunType$ = tunTypeTemporal$ then
        
        WindowTitle$("Temporal Frequency Tuning - " + s$);
        XUnits$("Temporal Frequency");
        ChanTitle$(1, "Chan 1");
        XRange(tunTemporalMinTF, tunTemporalMaxTF);
        
    case tunType$ = tunTypeArea$ then
        
        WindowTitle$("Aperture Area Tuning - " + s$);
        XUnits$("Aperture Diameter");
        ChanTitle$(1, "Chan 1");
        XRange(tunAreaMinDiam, tunAreaMaxDiam);
        
    case tunType$ = tunTypeXPos$ then
        
        WindowTitle$("X Position Tuning - " + s$);
        XUnits$("X Position");
        ChanTitle$(1, "Chan 1");
        XRange(tunXPosMinXPos, tunXPosMaxXPos);
        
    case tunType$ = tunTypeXYPos$ then
        
        WindowTitle$("XY Position Tuning - " + s$);
        XTitle$("X Position");
        ChanTitle$(0,"Y Position");  'Not an intuitive way to change the y title: ChanTitle$(0,...)
        XRange(tunXYPosMinXPos-1, tunXYPosMaxXPos+1);
        YRange(-1,tunXYPosMinYPos-1, tunXYPosMaxYPos+1);  'again, X and Y not the same.  Grr.  -1 for all channels
        'set up channels, one for each point in the grid
        for i% := 0 to tunXYPosNXSteps% do
            for j% := 0 to tunXYPosNYSteps% do
                count% := XYSetChan(0,1); 'create a channel with only one data point, return
                XYAddData(count%,tun1Values[i%],tun2values[j%]);  'put in a data point at the correct x,y coordinate
                XYDrawMode(count%,1,0);  'set draw mode to dots
                XYDrawMode(count%,2,5);  'set size of dots to invisible, will change later
            next;
        next;
        
        
    case tunType$ = tunTypeDisparity$ then
        
        WindowTitle$("Disparity Tuning - " + s$);
        XUnits$("Disparity (deg)");
        ChanTitle$(1, "Chan 1");
        XRange(2*tunDisparityCenterXPos-tunDisparityMaxXPos, tunDisparityMaxXPos);
        
    case tunType$ = tunTypeDonut$ then
        
        WindowTitle$("Donut Area Tuning - " + s$);
        XUnits$("Outer Diameter");
        ChanTitle$(1, "Chan 1");
        XRange(tunAreaMinDiam, tunAreaMaxDiam);
        
    case tunType$ = tunTypeBerliner$ then
        
        WindowTitle$("Berliner Procedure - " + s$);
        XUnits$("Stim Type");
        ChanTitle$(1, "Chan 1");
        XRange(0,5);
        
    case tunType$ = tunTypeBoxODonuts$ then  
        
        WindowTitle$("Box O' Donuts Procedure - " + s$);
        docase
        case tunType1$ = tunTypeContrast$ then
            XUnits$("Contrast (%)");
            XRange(tunContrastMinContrast, tunContrastMaxContrast);
        case tunType1$ = tunTypeOrientation$ then
            XUnits$("Orientation (degrees)");
            XRange(tunOriMinOrientation, tunOriMaxOrientation);
        case tunType1$ = tunTypeSpatial$ then
            XUnits$("Spatial Frequency");
            XRange(tunSpatialMinSF, tunSpatialMaxSF);
        case tunType1$ = tunTypeTemporal$ then
            XUnits$("Temporal Frequency");
            XRange(tunTemporalMinTF, tunTemporalMaxTF);
        case tunType1$ = tunTypeArea$ then
            XUnits$("Aperture Diameter");
            XRange(tunAreaMinDiam, tunAreaMaxDiam);
        case tunType1$ = tunTypeXPos$ then
            XUnits$("X Position");
            XRange(tunXPosMinXPos, tunXPosMaxXPos);
        endcase
        ChanTitle$(1, "Chan 1");
        
    case tunType$ = tunTypeCRG$ then  'I don't know if Ben will use this much, I'm going to go rogue and use the SECOND (tuning curve) for the X axis
        
        WindowTitle$("Contrast Reversing Grating Procedure - " + s$);
        docase
        case tunType1$ = tunTypeContrast$ then  'note that here tunType1$ is the SECOND...
            XUnits$("Contrast (%)");
            XRange(tunContrastMinContrast, tunContrastMaxContrast);
        case tunType1$ = tunTypeOrientation$ then
            XUnits$("Orientation (degrees)");
            XRange(tunOriMinOrientation, tunOriMaxOrientation);
        case tunType1$ = tunTypeSpatial$ then
            XUnits$("Spatial Frequency");
            XRange(tunSpatialMinSF, tunSpatialMaxSF);
        case tunType1$ = tunTypeTemporal$ then
            XUnits$("Temporal Frequency");
            XRange(tunTemporalMinTF, tunTemporalMaxTF);
        case tunType1$ = tunTypeArea$ then
            XUnits$("Aperture Diameter");
            XRange(tunAreaMinDiam, tunAreaMaxDiam);
        case tunType1$ = tunTypeXPos$ then
            XUnits$("X Position");
            XRange(tunXPosMinXPos, tunXPosMaxXPos);
        case tunType1$ = tunTypeBlank$ then
            XUnits$("Blank");
            XRange(-1, 1);
        case tunType1$ = tunTypeGratingOnly$ then
            XUnits$("Grating Off(0)/On(100)");
            XRange(0, 100);
        case tunType1$ = tunTypeCRG$ then
            XUnits$("CRG Secondary Off(0)/On(1)");
            XRange(0, 1);
        endcase
        ChanTitle$(1, "Chan 1");
        
    case tunType$ = tunTypeDanish$ then
        
        WindowTitle$("Danish Area Tuning - " + s$);
        XUnits$("Contrast (%)");
        XRange(tunGonzagoMinContrast, tunGonzagoMaxContrast);
        ChanTitle$(1, "Chan 1");
        
        
        
    case tunType$ = tunTypeGonzago$ then
        
        WindowTitle$("Gonzago Tuning - " + s$);
        XUnits$("Outer Diameter");
        ChanTitle$(1, "Chan 1");
        XRange(tunDanishMinOuterDiameter, tunDanishMaxOuterDiameter);
        
'But there's no tuning curve for DSS!  At least right now...        
'    case tunType$ = tunTypeDSS$ then
'        
'        WindowTitle$("Danish Area Tuning - " + s$);
'        XUnits$("Outer Diameter");
'        ChanTitle$(1, "Chan 1");
'        XRange(tunDanishMinOuterDiameter, tunDanishMaxOuterDiameter);        
        
    case tunType$ = tunTypeNullTest$ then
        
        'myTitle$ := s$ + " - Phase = ";  'these may not apply to tuning
        'myTitle2$ := " - Phase = ";
        WindowTitle$("Null Test Counterphase Tuning - " + s$);
        XUnits$("Phase (degrees)");
        ChanTitle$(1, "Chan 1");
        XRange(tunNullTestMinPhase, tunNullTestMaxPhase);        
        
        
    else
        
        Message("TuningCurveLabels Error - unknown value for tunType$: " + tunType$);
        
	endcase;
    
end;
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc CreateSampleConfiguration()
	var i%;
    var temp1$;
    var temp2$;
    var od;
    var key$;
    var eof% := 1;
    
    var masterTxt$;
    var slaveTxt$;
    
    
    
    ''''''' TESTING ''''''''
    
'    if tunType$ = tunTypeGonzago$ then     
'        'DoSampleAutoName(key$,"gz","gz",masterTxt$,slaveTxt$);
'        
'        'By definition, tuntype1 is contrast (on the core)  
'        GetRepeatedParameterProgression%(tunGonzagoCoreContrastNSteps%+1, 1, tun1Values[], tun1ValuesIndices%[], tunGonzagoMinContrast, tunGonzagoMaxContrast, 1, 0);
'        tun1NValues% := 2*(tunGonzagoCoreContrastNSteps%+1);
'        
'        
'        'By definition, tuntype2 is area (on the donut)
'        GetRepeatedParameterProgression%(tunGonzagoDonutAreaNSteps%+1, 1, tun2Values[], tun2ValuesIndices%[], tunGonzagoMinOuterDiameter, tunGonzagoMaxOuterDiameter, 1, 0);
'        tun2NValues% := 2*(tunGonzagoDonutAreaNSteps%+1);
'        
'        
'        tunNRepeats% := tunGonzagoNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics   
'        tunNAdvances% := tun1NValues%*tun2NValues%-1;  'this gives the correct number of advances
'        tunNValues% := tun1NValues%*tun2NValues%*tunGonzagoNRepeats%;  'now used in idle loop instead of (tunNAdvances%+1)*tunNRepeats
'        
'        'Now we need to grid the values out into two appropriate tunValues and tunValuesIndices (the randomizer bit)
'        GridStimuli(tun1Values[],tun2Values[],tun1NValues%,tun2NValues%,tun1ValuesIndices%[],tun2ValuesIndices%[],tunGonzagoProgression%,tunGonzagoNRepeats%); 
'        
'        'StringifyProgression$ will work just fine on tun1/2Values and tun1/2ValuesIndices
'        tun1ValuesStringified$ := StringifyProgression$(tun1NValues%*tun2NValues%*tunGonzagoNRepeats%, tun1Values[], tun1ValuesIndices%[]);
'        tun2ValuesStringified$ := StringifyProgression$(tun1NValues%*tun2NValues%*tunGonzagoNRepeats%, tun2Values[], tun2ValuesIndices%[]);
'        
'        printlog("Core values are: %s\n",tun1ValuesStringified$);
'        printlog("Donut values are: %s\n",tun2ValuesStringified$);
'        halt;
'    endif
'    
'    'read tuning file, if one is specified
'    if tunUseFile% = 1 then
'        eof%:=1;
'        readsetup(",","	 ","","","	");  'Standard read setup
'        FileOpen(tunTuningFile$,8,0);  'open specified file
''        if tunContrastDualScreenCombo% = 0 or tunAreaDualScreenCombo% = 0 then
''            while eof% > 0 do
''                eof% := read(tunValues$[tunFileLen%]);  'read to end of file, must put each value on a new line to count number of stimuli in a block
''                tunFileLen%+=1;  'increment tuning file length
''            wend
''        else
''            while eof% > 0 do
''                eof% := read(tunValues$[tunFileLen%]);  'read to end of file, must put each value on a new line to count number of stimuli in a block
''                tunFileLen%+=1;  'increment tuning file length
''            wend
''        endif;  
'        'The read function actually isn't any different in the two cases above
'        while eof% > 0 do
'            eof% := read(tunValues$[tunFileLen%]);  'read to end of file, must put each value on a new line to count number of stimuli in a block
'            tunFileLen%+=1;  'increment tuning file length
'        wend
'        tunFileLen%-=1;  'decrement tuning file length because we increment when we find EOF.
'        FileClose();  'close the file
'        'Now deal out the values to tun1Values and tun2Values
'        tun1FileLen% := 0;
'        tun2FileLen% := 0;
'        eof% := 0;  'Just reusing this variable, no longer is end of file, is now a label for tunValues1 or tunValues2
'        for i% := 0 to tunFileLen%-1 do
'            docase
'            case tunValues$[i%] = "-" then
'                eof% := 1;  'change to tunValues2[] on the "-"
'            case eof% = 0 then  'otherwise it is expected to be a number
'                tunValues[tun1FileLen%] := Val(tunValues$[i%]);  'may use tunValues or tun1Values later, let's not worry about which right now, fill both
'                tun1Values[tun1FileLen%] := Val(tunValues$[i%]);
'                tun1FileLen%+=1;  'increment tuning file length
'            case eof% = 1 then
'                tun2Values[tun2FileLen%] := Val(tunValues$[i%]);
'                tun2FileLen%+=1;  'increment tuning file length
'            endcase
'        next;
'        printlog("tun1 len is %d and tun2 len is %d\n",tun1FileLen%,tun2FileLen%);
'    endif
'   
'    if tunType$ = tunTypeContrast$ then 
'        tunNRepeats% := tunContrastNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics
'        if tunContrastDualScreenCombo% = 0 then
'            if tunUseFile% = 1 then
'                tunNAdvances% := tunFileLen%-1;
'                ShuffleAndExpand(tunFileLen%,tunNRepeats%,tunValuesIndices%[],tunContrastProgression%);
'            else
'                tunNAdvances% := tunContrastNSteps%;
'                GetRepeatedParameterProgression%(tunContrastNSteps%+1, tunNRepeats%, tunValues[], tunValuesIndices%[], tunContrastMinContrast, tunContrastMaxContrast, 1, tunContrastProgression%);
'            endif;
'            'tunNValues% := (tunContrastNSteps%+1)*tunContrastNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics
'            tunNValues% := (tunNAdvances%+1)*tunNRepeats%;  'shorter, should work the same as above commented line, keeping old line for contrast only just in case...
'            printlog("Tun Values are %f\n",tunValues);
'            printlog("Tun Values Indices are %d\n",tunValuesIndices%);
'            tunValuesStringified$ := StringifyProgression$(tunNValues%, tunValues, tunValuesIndices%);
'        else 'do the dual-screen combo version
'            if tunUseFile% = 1 then
'                'ShuffleAndExpand(tunFileLen%,1,tunValuesIndices%[],0);
'                tun1NValues% := tun1FileLen%;
'                tun2NValues% := tun2FileLen%;
'            else
'                GetRepeatedParameterProgression%(tunContrastNSteps%+1, 1, tun1Values[], tun1ValuesIndices%[], tunContrastMinContrast, tunContrastMaxContrast, 1, 0);
'                GetRepeatedParameterProgression%(tunContrastNSteps%+1, 1, tun2Values[], tun2ValuesIndices%[], tunContrastMinContrast, tunContrastMaxContrast, 1, 0);
'                tun1NValues% := (tunContrastNSteps%+1); 
'                tun2NValues% := (tunContrastNSteps%+1); 
'            endif;
'            tunNAdvances% := tun1NValues%*tun2NValues%-1;  'this gives the correct number of advances
'            tunNValues% := tun1NValues%*tun2NValues%*tunContrastNRepeats%;  'now used in idle loop instead of (tunNAdvances%+1)*tunNRepeats
'            'Now we need to grid the values out into two appropriate tunValues and tunValuesIndices (the randomizer bit)
'            GridStimuli(tun1Values[],tun2Values[],tun1NValues%,tun2NValues%,tun1ValuesIndices%[],tun2ValuesIndices%[],tunContrastProgression%,tunContrastNRepeats%); 
'            'StringifyProgression$ will work just fine on tun1/2Values and tun1/2ValuesIndices
'            tun1ValuesStringified$ := StringifyProgression$(tun1NValues%*tun2NValues%*tunContrastNRepeats%, tun1Values[], tun1ValuesIndices%[]);
'            tun2ValuesStringified$ := StringifyProgression$(tun1NValues%*tun2NValues%*tunContrastNRepeats%, tun2Values[], tun2ValuesIndices%[]);  
'        endif; 
'    endif;
'    printlog("tun values are %s\n",tunValuesStringified$);
'    halt
    
    ''''''' TESTING ''''''''
    
    
    
    
    
    
    
    docase
    case UseTwo1401s% = 1 and UsePlexon% = 1 then
        masterTxt$ := "MICRO";
        slaveTxt$ := "POWER";
    case UseTwo1401s% = 1 and UsePlexon% = 0 then  'this would be for any two-1401 scenario for Joe
        masterTxt$ := "MASTR";
        slaveTxt$ := "SLAVE";
    else
        'do not need to set these variables
    endcase
    
	SampleClear(); 'Set standard sampling state
    SampleChannels(64);  '32 does not work, we need more!
'	SampleAutoFile(0); 'Enable automatic file naming
	SampleAutoComment(0); 'Prompt for comment after sampling
	SampleAutoCommit(60); 'Seconds between each file commit
    
    ' Set path for new data files, and for those saved automatically
    FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 3);
    FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 1);
    
    'read tuning file, if one is specified
    if tunUseFile% = 1 then
        eof%:=1;
        readsetup(",","	 ","","","	");  'Standard read setup
        FileOpen(tunTuningFile$,8,0);  'open specified file
'        if tunContrastDualScreenCombo% = 0 or tunAreaDualScreenCombo% = 0 then
'            while eof% > 0 do
'                eof% := read(tunValues$[tunFileLen%]);  'read to end of file, must put each value on a new line to count number of stimuli in a block
'                tunFileLen%+=1;  'increment tuning file length
'            wend
'        else
'            while eof% > 0 do
'                eof% := read(tunValues$[tunFileLen%]);  'read to end of file, must put each value on a new line to count number of stimuli in a block
'                tunFileLen%+=1;  'increment tuning file length
'            wend
'        endif;  
        'The read function actually isn't any different in the two cases above
        while eof% > 0 do
            eof% := read(tunValues$[tunFileLen%]);  'read to end of file, must put each value on a new line to count number of stimuli in a block
            tunFileLen%+=1;  'increment tuning file length
        wend
        tunFileLen%-=1;  'decrement tuning file length because we increment when we find EOF.
        FileClose();  'close the file
        'Now deal out the values to tun1Values and tun2Values
        tun1FileLen% := 0;
        tun2FileLen% := 0;
        eof% := 0;  'Just reusing this variable, no longer is end of file, is now a label for tunValues1 or tunValues2
        for i% := 0 to tunFileLen%-1 do
            docase
            case tunValues$[i%] = "-" then
                eof% := 1;  'change to tunValues2[] on the "-"
            case eof% = 0 then  'otherwise it is expected to be a number
                tunValues[tun1FileLen%] := Val(tunValues$[i%]);  'may use tunValues or tun1Values later, let's not worry about which right now, fill both
                tun1Values[tun1FileLen%] := Val(tunValues$[i%]);
                tun1FileLen%+=1;  'increment tuning file length
            case eof% = 1 then
                tun2Values[tun2FileLen%] := Val(tunValues$[i%]);
                tun2FileLen%+=1;  'increment tuning file length
            endcase
        next;
    endif 
    
    
    'read tuning file for box'o'donuts curve 1, if one is specified
    if tunUseFile1% = 1 then
        eof%:=1;
        readsetup(",","	 ","","","	");  'Standard read setup
        FileOpen(tunTuningFile1$,8,0);  'open specified file
        while eof% > 0 do
            eof% := read(tun1Values[tun1FileLen%]);  'read to end of file, must put each value on a new line to count number of stimuli in a block
            tun1FileLen%+=1;  'increment tuning file length
        wend
        tun1FileLen%-=1;  'decrement tuning file length because we increment when we find EOF.
        FileClose();  'close the file
    endif
    
    
    'read tuning file for box'o'donuts curve 2, if one is specified
    if tunUseFile2% = 1 then
        eof%:=1;
        readsetup(",","	 ","","","	");  'Standard read setup
        FileOpen(tunTuningFile2$,8,0);  'open specified file
        while eof% > 0 do
            eof% := read(tun2Values[tun2FileLen%]);  'read to end of file, must put each value on a new line to count number of stimuli in a block
            tun2FileLen%+=1;  'increment tuning file length
        wend
        tun2FileLen%-=1;  'decrement tuning file length because we increment when we find EOF.
        FileClose();  'close the file
    endif
    
    
    key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Temp\\Filepref";
    
    docase
        
    case tunType$ = tunTypeDots$ then 
        DoSampleAutoName(key$,"dots","dot",masterTxt$,slaveTxt$);
        
        tunNAdvances% := tunDotsNSteps%;
        tunNRepeats% := tunDotsNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics
        GetRepeatedParameterProgression%(tunDotsNSteps%+1, tunDotsNRepeats%, tunValues[], tunValuesIndices%[], tunDotsMinOrientation, tunDotsMaxOrientation, 0, tunDotsProgression%);  'Note - linear spacing for orientation, not log
        tunNValues% := (tunDotsNSteps%+1)*tunDotsNRepeats%;
        tunValuesStringified$ := StringifyProgression$(tunNValues%, tunValues, tunValuesIndices%);        
    case tunType$ = tunTypeContrast$ then 
        'this is the old way...might need to look back if the new way doesn't work!
'        if UseTwo1401s% = 0 then
'            SampleAutoName$(dataCellName$ + "_con_000");  'NOTE: maximum of 13 characters!!!
'        else
'            EqualizeSMRFilenumbers(dataPathRoot$ + "\\" + dataDataSet$,dataCellName$+"_conMICRO_",dataCellName$+"_conPOWER_");
'            SampleAutoName$(dataCellName$ + "_conMICRO_000");  'NOTE: maximum of 13 characters!!!
'            SetStringRegistryValue(key$, "pref", "con");
'        endif;
        DoSampleAutoName(key$,"con","con",masterTxt$,slaveTxt$);
        
        'this is the old way...might need to look back if the new way doesn't work!
        'tunNAdvances% := tunContrastNSteps%;  'this...
        'tunNRepeats% := tunContrastNRepeats%; '...and this are only used in a printlog statement
        'GetRepeatedParameterProgression%(tunContrastNSteps%+1, tunContrastNRepeats%, tunValues[], tunValuesIndices%[], tunContrastMinContrast, tunContrastMaxContrast, 1, tunContrastProgression%);
        'tunNValues% := (tunContrastNSteps%+1)*tunContrastNRepeats%;
        'tunValuesStringified$ := StringifyProgression$(tunNValues%, tunValues, tunValuesIndices%);
        tunNRepeats% := tunContrastNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics
        if tunContrastDualScreenCombo% = 0 then
            if tunUseFile% = 1 then
                tunNAdvances% := tunFileLen%-1;
                ShuffleAndExpand(tunFileLen%,tunNRepeats%,tunValuesIndices%[],tunContrastProgression%);
            else
                tunNAdvances% := tunContrastNSteps%;
                GetRepeatedParameterProgression%(tunContrastNSteps%+1, tunNRepeats%, tunValues[], tunValuesIndices%[], tunContrastMinContrast, tunContrastMaxContrast, 1, tunContrastProgression%);
            endif;
            'tunNValues% := (tunContrastNSteps%+1)*tunContrastNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics
            tunNValues% := (tunNAdvances%+1)*tunNRepeats%;  'shorter, should work the same as above commented line, keeping old line for contrast only just in case...
            tunValuesStringified$ := StringifyProgression$(tunNValues%, tunValues, tunValuesIndices%);
        else 'do the dual-screen combo version
            if tunUseFile% = 1 then
                'ShuffleAndExpand(tunFileLen%,1,tunValuesIndices%[],0);
                tun1NValues% := tun1FileLen%;
                tun2NValues% := tun2FileLen%;
            else
                GetRepeatedParameterProgression%(tunContrastNSteps%+1, 1, tun1Values[], tun1ValuesIndices%[], tunContrastMinContrast, tunContrastMaxContrast, 1, 0);
                GetRepeatedParameterProgression%(tunContrastNSteps%+1, 1, tun2Values[], tun2ValuesIndices%[], tunContrastMinContrast, tunContrastMaxContrast, 1, 0);
                tun1NValues% := (tunContrastNSteps%+1); 
                tun2NValues% := (tunContrastNSteps%+1); 
            endif;
            tunNAdvances% := tun1NValues%*tun2NValues%-1;  'this gives the correct number of advances
            tunNValues% := tun1NValues%*tun2NValues%*tunContrastNRepeats%;  'now used in idle loop instead of (tunNAdvances%+1)*tunNRepeats
            'Now we need to grid the values out into two appropriate tunValues and tunValuesIndices (the randomizer bit)
            GridStimuli(tun1Values[],tun2Values[],tun1NValues%,tun2NValues%,tun1ValuesIndices%[],tun2ValuesIndices%[],tunContrastProgression%,tunContrastNRepeats%); 
            'StringifyProgression$ will work just fine on tun1/2Values and tun1/2ValuesIndices
            tun1ValuesStringified$ := StringifyProgression$(tun1NValues%*tun2NValues%*tunContrastNRepeats%, tun1Values[], tun1ValuesIndices%[]);
            tun2ValuesStringified$ := StringifyProgression$(tun1NValues%*tun2NValues%*tunContrastNRepeats%, tun2Values[], tun2ValuesIndices%[]);  
        endif;        
        
        
    case tunType$ = tunTypeOrientation$ then 
        DoSampleAutoName(key$,"ori","ori",masterTxt$,slaveTxt$);
        
        tunNRepeats% := tunOriNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics
        if tunUseFile% = 1 then
            tunNAdvances% := tunFileLen%-1;
            ShuffleAndExpand(tunFileLen%,tunNRepeats%,tunValuesIndices%[],tunOriProgression%);
        else
            tunNAdvances% := tunOriNSteps%;
            GetRepeatedParameterProgression%(tunOriNSteps%+1, tunNRepeats%, tunValues[], tunValuesIndices%[], tunOriMinOrientation, tunOriMaxOrientation, 0, tunOriProgression%);
        endif;
        tunNValues% := (tunNAdvances%+1)*tunNRepeats%;  
        tunValuesStringified$ := StringifyProgression$(tunNValues%, tunValues, tunValuesIndices%);
    case tunType$ = tunTypeSpatial$ then 
        DoSampleAutoName(key$,"spa","spa",masterTxt$,slaveTxt$);
        
        tunNRepeats% := tunSpatialNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics
        if tunUseFile% = 1 then
            tunNAdvances% := tunFileLen%-1;
            ShuffleAndExpand(tunFileLen%,tunNRepeats%,tunValuesIndices%[],tunSpatialProgression%);
        else
            tunNAdvances% := tunSpatialNSteps%;
            GetRepeatedParameterProgression%(tunSpatialNSteps%+1, tunNRepeats%, tunValues[], tunValuesIndices%[], tunSpatialMinSF, tunSpatialMaxSF, 1, tunSpatialProgression%);
        endif;
        tunNValues% := (tunNAdvances%+1)*tunNRepeats%;  
        tunValuesStringified$ := StringifyProgression$(tunNValues%, tunValues, tunValuesIndices%);
    case tunType$ = tunTypeTemporal$ then 
        DoSampleAutoName(key$,"tem","tem",masterTxt$,slaveTxt$);
        
        tunNRepeats% := tunTemporalNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics
        if tunUseFile% = 1 then
            tunNAdvances% := tunFileLen%-1;
            ShuffleAndExpand(tunFileLen%,tunNRepeats%,tunValuesIndices%[],tunTemporalProgression%);
        else
            tunNAdvances% := tunTemporalNSteps%;
            GetRepeatedParameterProgression%(tunTemporalNSteps%+1, tunNRepeats%, tunValues[], tunValuesIndices%[], tunTemporalMinTF, tunTemporalMaxTF, 0, tunTemporalProgression%);
        endif;
        tunNValues% := (tunNAdvances%+1)*tunNRepeats%;  
        tunValuesStringified$ := StringifyProgression$(tunNValues%, tunValues, tunValuesIndices%);
    case tunType$ = tunTypeArea$ then 
        DoSampleAutoName(key$,"area","are",masterTxt$,slaveTxt$);
        
        tunNRepeats% := tunAreaNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics
        if tunAreaDualScreenCombo% = 0 then
            if tunUseFile% = 1 then
                tunNAdvances% := tunFileLen%-1;
                ShuffleAndExpand(tunFileLen%,tunNRepeats%,tunValuesIndices%[],tunAreaProgression%);
            else
                tunNAdvances% := tunAreaNSteps%;
                GetRepeatedParameterProgression%(tunAreaNSteps%+1, tunNRepeats%, tunValues[], tunValuesIndices%[], tunAreaMinDiam, tunAreaMaxDiam, 1, tunAreaProgression%);
            endif;
            'tunNValues% := (tunAreaNSteps%+1)*tunAreaNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics
            tunNValues% := (tunNAdvances%+1)*tunNRepeats%;  'shorter, should work the same as above commented line, keeping old line for contrast only just in case...
            tunValuesStringified$ := StringifyProgression$(tunNValues%, tunValues, tunValuesIndices%);
        else 'do the dual-screen combo version
            if tunUseFile% = 1 then
                'ShuffleAndExpand(tunFileLen%,1,tunValuesIndices%[],0);
                tun1NValues% := tun1FileLen%;
                tun2NValues% := tun2FileLen%;
            else
                GetRepeatedParameterProgression%(tunAreaNSteps%+1, 1, tun1Values[], tun1ValuesIndices%[], tunAreaMinDiam, tunAreaMaxDiam, 1, 0);
                GetRepeatedParameterProgression%(tunAreaNSteps%+1, 1, tun2Values[], tun2ValuesIndices%[], tunAreaMinDiam, tunAreaMaxDiam, 1, 0);
                tun1NValues% := (tunAreaNSteps%+1); 
                tun2NValues% := (tunAreaNSteps%+1); 
            endif;
            tunNAdvances% := tun1NValues%*tun2NValues%-1;  'this gives the correct number of advances
            tunNValues% := tun1NValues%*tun2NValues%*tunAreaNRepeats%;  'now used in idle loop instead of (tunNAdvances%+1)*tunNRepeats
            'Now we need to grid the values out into two appropriate tunValues and tunValuesIndices (the randomizer bit)
            GridStimuli(tun1Values[],tun2Values[],tun1NValues%,tun2NValues%,tun1ValuesIndices%[],tun2ValuesIndices%[],tunAreaProgression%,tunAreaNRepeats%); 
            'StringifyProgression$ will work just fine on tun1/2Values and tun1/2ValuesIndices
            tun1ValuesStringified$ := StringifyProgression$(tun1NValues%*tun2NValues%*tunAreaNRepeats%, tun1Values[], tun1ValuesIndices%[]);
            tun2ValuesStringified$ := StringifyProgression$(tun1NValues%*tun2NValues%*tunAreaNRepeats%, tun2Values[], tun2ValuesIndices%[]);  
        endif;        
        
    case tunType$ = tunTypeNullTest$ then 
        DoSampleAutoName(key$,"nulltest","nul",masterTxt$,slaveTxt$);
        
        tunNRepeats% := tunNullTestNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics
        if tunUseFile% = 1 then
            tunNAdvances% := tunFileLen%-1;
            ShuffleAndExpand(tunFileLen%,tunNRepeats%,tunValuesIndices%[],tunNullTestProgression%);
        else
            tunNAdvances% := tunNullTestNSteps%;
            GetRepeatedParameterProgression%(tunNullTestNSteps%+1, tunNRepeats%, tunValues[], tunValuesIndices%[], tunNullTestMinPhase, tunNullTestMaxPhase, 0, tunNullTestProgression%);
        endif;
        tunNValues% := (tunNAdvances%+1)*tunNRepeats%;  
        tunValuesStringified$ := StringifyProgression$(tunNValues%, tunValues, tunValuesIndices%); 
    case tunType$ = tunTypeLag$ then 
        DoSampleAutoName(key$,"lag","lag",masterTxt$,slaveTxt$);
        
        'this is the old way...might need to look back if the new way doesn't work!
        'tunNAdvances% := tunLagNSteps%;  'this...
        'tunNRepeats% := tunLagNRepeats%; '...and this are only used in a printlog statement
        'GetRepeatedParameterProgression%(tunLagNSteps%+1, tunLagNRepeats%, tunValues[], tunValuesIndices%[], tunLagMinLagFrames, tunLagMaxLagFrames, 0, tunLageProgression%);
        'tunNValues% := (tunLagNSteps%+1)*tunLagNRepeats%;
        'tunValuesStringified$ := StringifyProgression$(tunNValues%, tunValues, tunValuesIndices%);
        tunNRepeats% := tunLagNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics
        if tunUseFile% = 1 then
            tunNAdvances% := tunFileLen%-1;
            ShuffleAndExpand(tunFileLen%,tunNRepeats%,tunValuesIndices%[],tunLagProgression%);
        else
            tunNAdvances% := tunLagNSteps%;
            GetRepeatedParameterProgression%(tunLagNSteps%+1, tunNRepeats%, tunValues[], tunValuesIndices%[], tunLagMinLagFrames, tunLagMaxLagFrames, 0, tunLagProgression%);
        endif;
        'tunNValues% := (tunLagNSteps%+1)*tunLagNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics
        tunNValues% := (tunNAdvances%+1)*tunNRepeats%;  'shorter, should work the same as above commented line, keeping old line for contrast only just in case...
        tunValuesStringified$ := StringifyProgression$(tunNValues%, tunValues, tunValuesIndices%);
    case tunType$ = tunTypeXPos$ then 
        DoSampleAutoName(key$,"xpos","xps",masterTxt$,slaveTxt$);
        
        tunNAdvances% := tunXPosNSteps%;
        tunNRepeats% := tunXPosNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics
        GetRepeatedParameterProgression%(tunXPosNSteps%+1, tunXPosNRepeats%, tunValues[], tunValuesIndices%[], tunXPosMinXPos, tunXPosMaxXPos, 0, tunXPosProgression%);  'Note - linear spacing for position, not log
        tunNValues% := (tunXPosNSteps%+1)*tunXPosNRepeats%;
        tunValuesStringified$ := StringifyProgression$(tunNValues%, tunValues, tunValuesIndices%);   
    case tunType$ = tunTypeXYPos$ then 
        DoSampleAutoName(key$,"xypos","xyp",masterTxt$,slaveTxt$);
        
        'for tun1, use X
        if tunXYPosNXSteps% = 0 then  'this allows for no x movement
            tun1Values[0] := tunXYPosMinXPos;
            tun1ValuesIndices%[0] := 1;
        else
            GetRepeatedParameterProgression%(tunXYPosNXSteps%+1, 1, tun1Values[], tun1ValuesIndices%[], tunXYPosMinXPos, tunXYPosMaxXPos, 0, 0);
        endif;
        tun1NValues% := (tunXYPosNXSteps%+1);
        
        'for tun2, use Y
        if tunXYPosNYSteps% = 0 then  'this allows for no y movement
            tun2Values[0] := tunXYPosMinYPos;
            tun2ValuesIndices%[0] := 1;
        else
            GetRepeatedParameterProgression%(tunXYPosNYSteps%+1, 1, tun2Values[], tun2ValuesIndices%[], tunXYPosMinYPos, tunXYPosMaxYPos, 0, 0);
        endif;
        tun2NValues% := (tunXYPosNYSteps%+1);       
        
        tunNRepeats% := tunXYPosNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics   
        tunNAdvances% := tun1NValues%*tun2NValues%-1;  'this gives the correct number of advances
        tunNValues% := tun1NValues%*tun2NValues%*tunXYPosNRepeats%;  'now used in idle loop instead of (tunNAdvances%+1)*tunNRepeats
        
        'Now we need to grid the values out into two appropriate tunValues and tunValuesIndices (the randomizer bit)
        GridStimuli(tun1Values[],tun2Values[],tun1NValues%,tun2NValues%,tun1ValuesIndices%[],tun2ValuesIndices%[],tunXYPosProgression%,tunXYPosNRepeats%);         
        
        'StringifyProgression$ will work just fine on tun1/2Values and tun1/2ValuesIndices
        tun1ValuesStringified$ := StringifyProgression$(tun1NValues%*tun2NValues%*tunXYPosNRepeats%, tun1Values[], tun1ValuesIndices%[]);
        tun2ValuesStringified$ := StringifyProgression$(tun1NValues%*tun2NValues%*tunXYPosNRepeats%, tun2Values[], tun2ValuesIndices%[]);
        
        printlog("X values are %s\n",tun1ValuesStringified$);
        printlog("Y values are %s\n",tun2ValuesStringified$);
        tunValuesStringified$ := InterleaveStrings$(tun1ValuesStringified$,tun2ValuesStringified$);
        printlog("XY values are %s\n",tunValuesStringified$);
        
    case tunType$ = tunTypeDisparity$ then 
        DoSampleAutoName(key$,"disprity","dis",masterTxt$,slaveTxt$);
        
        tunNAdvances% := tunDisparityNSteps%;
        tunNRepeats% := tunDisparityNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics
        GetRepeatedSymmetricParameterProgression%(tunDisparityNSteps%+1, tunDisparityNRepeats%, tunValues[], tunValuesIndices%[], tunDisparityCenterXPos, tunDisparityMaxXPos, 0, tunDisparityProgression%);  'linear spacing only
        'GetRepeatedSymmetricParameterProgression%(tunDisparityNSteps%+1, tunDisparityNRepeats%, tunValues[], tunValuesIndices%[], tunDisparityCenterXPos, tunDisparityMaxXPos, 1-tunDisparityLinear%, tunDisparityProgression%);  'allow log spacing
        tunNValues% := (2*tunDisparityNSteps%+1)*tunDisparityNRepeats%;
        tunValuesStringified$ := StringifyProgression$(tunNValues%, tunValues, tunValuesIndices%);         
    case tunType$ = tunTypeDonut$ then 
        DoSampleAutoName(key$,"donut","don",masterTxt$,slaveTxt$);
        
        tunNAdvances% := tunAreaNSteps%;
        tunNRepeats% := tunAreaNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics
        GetRepeatedParameterProgression%(tunAreaNSteps%+1, tunAreaNRepeats%, tunValues[], tunValuesIndices%[], tunAreaMinDiam, tunAreaMaxDiam, 1, tunDonutProgression%);
        tunNValues% := (tunAreaNSteps%+1)*tunAreaNRepeats%;
        tunValuesStringified$ := StringifyProgression$(tunNValues%, tunValues, tunValuesIndices%);
        'PrintLog("nsteps %d nrepeats %d nvalues %d\n", tunAreaNSteps%, tunAreaNRepeats%, tunNValues%);
        'for i% := 0 to tunNValues%-1 do
        '    PrintLog("%d %f\n", i%, tunValues[tunValuesIndices%[i%]]);
        'next
    case tunType$ = tunTypeBerliner$ then 
        DoSampleAutoName(key$,"berliner","ber",masterTxt$,slaveTxt$);
        
        tunNAdvances% := tunBerlinerNSteps%-1;  'subtract one because tunBerlinerNSteps% is literal (that is, n stims)
        tunNRepeats% := tunBerlinerNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics
        GetRepeatedParameterProgression%(tunBerlinerNSteps%, tunBerlinerNRepeats%, tunValues[], tunValuesIndices%[], 1, tunBerlinerNSteps%, 0, tunBerlinerProgression%);
        tunNValues% := (tunBerlinerNSteps%)*tunBerlinerNRepeats%;
        tunValuesStringified$ := StringifyProgression$(tunNValues%, tunValues, tunValuesIndices%);
    case tunType$ = tunTypeBoxODonuts$ then
        
        'here we can do a GRPP for each of the two tuning curves (using one repeat, one repeat only) to get the values
        'then we have to randomize (or not) before stringifying
        
        docase
        case tuntype1$ = tunTypeContrast$ then
            if tunUseFile1% = 1 then
                ShuffleAndExpand(tun1FileLen%,1,tun1ValuesIndices%[],0);
                tun1NValues% := tun1FileLen%;
            else                
                GetRepeatedParameterProgression%(tunContrastNSteps%+1, 1, tun1Values[], tun1ValuesIndices%[], tunContrastMinContrast, tunContrastMaxContrast, 1, 0);
                tun1NValues% := (tunContrastNSteps%+1);
            endif;
            temp1$ := "_con";
        case tuntype1$ = tunTypeOrientation$ then
            if tunUseFile1% = 1 then
                ShuffleAndExpand(tun1FileLen%,1,tun1ValuesIndices%[],0);
                tun1NValues% := tun1FileLen%;
            else
                GetRepeatedParameterProgression%(tunOriNSteps%+1, 1, tun1Values[], tun1ValuesIndices%[], tunOriMinOrientation, tunOriMaxOrientation, 0, 0); 
                tun1NValues% := (tunOriNSteps%+1); 
            endif;            
            temp1$ := "_ori";            
        case tuntype1$ = tunTypeSpatial$ then
            if tunUseFile1% = 1 then
                ShuffleAndExpand(tun1FileLen%,1,tun1ValuesIndices%[],0);
                tun1NValues% := tun1FileLen%;
            else
                GetRepeatedParameterProgression%(tunSpatialNSteps%+1, 1, tun1Values[], tun1ValuesIndices%[], tunSpatialMinSF, tunSpatialMaxSF, 1, 0);
                tun1NValues% := (tunSpatialNSteps%+1);
            endif;
            temp1$ := "_spa";
        case tuntype1$ = tunTypeTemporal$ then
            if tunUseFile1% = 1 then
                ShuffleAndExpand(tun1FileLen%,1,tun1ValuesIndices%[],0);
                tun1NValues% := tun1FileLen%;
            else
                GetRepeatedParameterProgression%(tunTemporalNSteps%+1, 1, tun1Values[], tun1ValuesIndices%[], tunTemporalMinTF, tunTemporalMaxTF, 1, 0);
                tun1NValues% := (tunTemporalNSteps%+1);
            endif;
            temp1$ := "_tem";
        case tuntype1$ = tunTypeArea$ then
            if tunUseFile1% = 1 then
                ShuffleAndExpand(tun1FileLen%,1,tun1ValuesIndices%[],0);
                tun1NValues% := tun1FileLen%;
            else
                GetRepeatedParameterProgression%(tunAreaNSteps%+1, 1, tun1Values[], tun1ValuesIndices%[], tunAreaMinDiam, tunAreaMaxDiam, 1, 0);
                tun1NValues% := (tunAreaNSteps%+1);
            endif;
            temp1$ := "_area";
        case tuntype1$ = tunTypeXPos$ then
            GetRepeatedParameterProgression%(tunXPosNSteps%+1, 1, tun1Values[], tun1ValuesIndices%[], tunXPosMinXPos, tunXPosMaxXPos, 0, 0);
            tun1NValues% := (tunXPosNSteps%+1);
            temp1$ := "_xpos";
        case tuntype1$ = tunTypeLag$ then
            if tunUseFile1% = 1 then
                ShuffleAndExpand(tun1FileLen%,1,tun1ValuesIndices%[],0);
                tun1NValues% := tun1FileLen%;
            else                
                GetRepeatedParameterProgression%(tunLagNSteps%+1, 1, tun1Values[], tun1ValuesIndices%[], tunLagMinLagFrames, tunLagMaxLagFrames, 0, 0);
                tun1NValues% := (tunLagNSteps%+1);
            endif;
            temp1$ := "_lag";
        endcase;
        
        docase
        case tuntype2$ = tunTypeContrast$ then
            if tunUseFile2% = 1 then
                ShuffleAndExpand(tun2FileLen%,1,tun2ValuesIndices%[],0);
                tun2NValues% := tun2FileLen%;
            else
                GetRepeatedParameterProgression%(tunContrastNSteps%+1, 1, tun2Values[], tun2ValuesIndices%[], tunContrastMinContrast, tunContrastMaxContrast, 1, 0);
                tun2NValues% := (tunContrastNSteps%+1); 
            endif;
            temp2$ := "_con";
        case tuntype2$ = tunTypeOrientation$ then
            if tunUseFile2% = 1 then
                ShuffleAndExpand(tun2FileLen%,1,tun2ValuesIndices%[],0);
                tun2NValues% := tun2FileLen%;
            else
                GetRepeatedParameterProgression%(tunOriNSteps%+1, 1, tun2Values[], tun2ValuesIndices%[], tunOriMinOrientation, tunOriMaxOrientation, 0, 0);
                tun2NValues% := (tunOriNSteps%+1);
            endif;            
            temp2$ := "_ori";            
        case tuntype2$ = tunTypeSpatial$ then
            if tunUseFile2% = 1 then
                ShuffleAndExpand(tun2FileLen%,1,tun2ValuesIndices%[],0);
                tun2NValues% := tun2FileLen%;
            else
                GetRepeatedParameterProgression%(tunSpatialNSteps%+1, 1, tun2Values[], tun2ValuesIndices%[], tunSpatialMinSF, tunSpatialMaxSF, 1, 0);
                tun2NValues% := (tunSpatialNSteps%+1);
            endif;
            temp2$ := "_spa";
        case tuntype2$ = tunTypeTemporal$ then
            if tunUseFile2% = 1 then
                ShuffleAndExpand(tun2FileLen%,1,tun2ValuesIndices%[],0);
                tun2NValues% := tun2FileLen%;
            else
                GetRepeatedParameterProgression%(tunTemporalNSteps%+1, 1, tun2Values[], tun2ValuesIndices%[], tunTemporalMinTF, tunTemporalMaxTF, 1, 0);
                tun2NValues% := (tunTemporalNSteps%+1);
            endif;
            temp2$ := "_tem";
        case tuntype2$ = tunTypeArea$ then
            if tunUseFile2% = 1 then
                ShuffleAndExpand(tun2FileLen%,1,tun2ValuesIndices%[],0);
                tun2NValues% := tun2FileLen%;
            else
                GetRepeatedParameterProgression%(tunAreaNSteps%+1, 1, tun2Values[], tun2ValuesIndices%[], tunAreaMinDiam, tunAreaMaxDiam, 1, 0);
                tun2NValues% := (tunAreaNSteps%+1);
            endif;
            temp2$ := "_area";
        case tuntype2$ = tunTypeXPos$ then
            GetRepeatedParameterProgression%(tunXPosNSteps%+1, 1, tun2Values[], tun2ValuesIndices%[], tunXPosMinXPos, tunXPosMaxXPos, 0, 0);
            tun2NValues% := (tunXPosNSteps%+1);
            temp2$ := "_xpos";
        case tuntype2$ = tunTypeLag$ then
            if tunUseFile2% = 1 then
                ShuffleAndExpand(tun2FileLen%,1,tun2ValuesIndices%[],0);
                tun2NValues% := tun2FileLen%;
            else
                GetRepeatedParameterProgression%(tunLagNSteps%+1, 1, tun2Values[], tun2ValuesIndices%[], tunLagMinLagFrames, tunLagMaxLagFrames, 0, 0);
                tun2NValues% := (tunLagNSteps%+1); 
            endif;
            temp2$ := "_lag";
        endcase;
              
        DoSampleAutoName(key$,"_boxodonuts" + temp1$ + temp2$,"_boxodonuts" + temp1$ + temp2$,masterTxt$,slaveTxt$);  'Note that this does not reflect the correct number of characters...it may not work properly?
        
        tunNRepeats% := tunBoxODonutsNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics   
        tunNAdvances% := tun1NValues%*tun2NValues%-1;  'this gives the correct number of advances
        tunNValues% := tun1NValues%*tun2NValues%*tunBoxODonutsNRepeats%;  'now used in idle loop instead of (tunNAdvances%+1)*tunNRepeats
        
        'Now we need to grid the values out into two appropriate tunValues and tunValuesIndices (the randomizer bit)
        GridStimuli(tun1Values[],tun2Values[],tun1NValues%,tun2NValues%,tun1ValuesIndices%[],tun2ValuesIndices%[],tunBoxODonutsProgression%,tunBoxODonutsNRepeats%); 
        
        'StringifyProgression$ will work just fine on tun1/2Values and tun1/2ValuesIndices
        tun1ValuesStringified$ := StringifyProgression$(tun1NValues%*tun2NValues%*tunBoxODonutsNRepeats%, tun1Values[], tun1ValuesIndices%[]);
        tun2ValuesStringified$ := StringifyProgression$(tun1NValues%*tun2NValues%*tunBoxODonutsNRepeats%, tun2Values[], tun2ValuesIndices%[]);
    case tunType$ = tunTypeCRG$ then
        
        'GetRepeatedParameterProgression%(n%, nr%, result[], indices%[], firstval, lastval, ilog%, irandom%)
        'Generate one list for the CRG on the "main" (rather than master/slave) screen
        GetRepeatedParameterProgression%(tunCRGNSeq1%,1,tun1Values[],tun1ValuesIndices%[],0,tunCRGNSeq1%-1,0,tunCRGProgression%);
        tun1NValues% := tunCRGNSeq1%;
        
        'Generate a second list for the tuning curve on the "secondary" (rather than master/slave) screen
        'Note the ugly mix of tuntype1$, temp2$, and tun2NValues%, etc., and then try to forget about it.  Not worth fixing.
        'All of these are the same as for Box O' Donuts except for CRG2, Blank (Static is treated as contrast)
        docase
        case tuntype1$ = tunTypeContrast$ then
            GetRepeatedParameterProgression%(tunContrastNSteps%+1, 1, tun2Values[], tun2ValuesIndices%[], tunContrastMinContrast, tunContrastMaxContrast, 1, 0);
            tun2NValues% := (tunContrastNSteps%+1); 
            temp2$ := "_con";
        case tuntype1$ = tunTypeOrientation$ then
            GetRepeatedParameterProgression%(tunOriNSteps%+1, 1, tun2Values[], tun2ValuesIndices%[], tunOriMinOrientation, tunOriMaxOrientation, 0, 0);
            tun2NValues% := (tunOriNSteps%+1);  
            temp2$ := "_ori";            
        case tuntype1$ = tunTypeSpatial$ then
            GetRepeatedParameterProgression%(tunSpatialNSteps%+1, 1, tun2Values[], tun2ValuesIndices%[], tunSpatialMinSF, tunSpatialMaxSF, 1, 0);
            tun2NValues% := (tunSpatialNSteps%+1);
            temp2$ := "_spa";
        case tuntype1$ = tunTypeTemporal$ then
            GetRepeatedParameterProgression%(tunTemporalNSteps%+1, 1, tun2Values[], tun2ValuesIndices%[], tunTemporalMinTF, tunTemporalMaxTF, 1, 0);
            tun2NValues% := (tunTemporalNSteps%+1);
            temp2$ := "_tem";
        case tuntype1$ = tunTypeArea$ then
            GetRepeatedParameterProgression%(tunAreaNSteps%+1, 1, tun2Values[], tun2ValuesIndices%[], tunAreaMinDiam, tunAreaMaxDiam, 1, 0);
            tun2NValues% := (tunAreaNSteps%+1);
            temp2$ := "_area";
        case tuntype1$ = tunTypeXPos$ then
            GetRepeatedParameterProgression%(tunXPosNSteps%+1, 1, tun2Values[], tun2ValuesIndices%[], tunXPosMinXPos, tunXPosMaxXPos, 1, 0);
            tun2NValues% := (tunXPosNSteps%+1);
            temp2$ := "_xpos";
        case tuntype1$ = tunTypeLag$ then
            GetRepeatedParameterProgression%(tunLagNSteps%+1, 1, tun2Values[], tun2ValuesIndices%[], tunLagMinLagFrames, tunLagMaxLagFrames, 0, 0);
            tun2NValues% := (tunLagNSteps%+1);
            temp2$ := "_lag";
        case tuntype1$ = tunTypeBlank$ then
            tun2NValues% := 1;
            temp2$ := "_blank";
        case tuntype1$ = tunTypeGratingOnly$ then
            GetRepeatedParameterProgression%(2, 1, tun2Values[], tun2ValuesIndices%[], 0, 100, 0, 0);
            tun2NValues% := 2;
            temp2$ := "_grat";
        case tuntype1$ = tunTypeCRG$ then
            'OK, the trick here is going to be in the StringifyProgression, and not here
            GetRepeatedParameterProgression%(2, 1, tun2Values[], tun2ValuesIndices%[], 0, 100, 0, 0);
            tun2NValues% := 2;
            temp2$ := "_crg";
        endcase;
        
        DoSampleAutoName(key$,"_crg" + temp2$,"_crg" + temp2$,masterTxt$,slaveTxt$);
        
        
        tunNRepeats% := tunCRGNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics
        tunNAdvances% := tun1NValues%*tun2NValues%-1;  'this gives the correct number of advances
        tunNValues% := tun1NValues%*tun2NValues%*tunCRGNRepeats%;  'now used in idle loop instead of (tunNAdvances%+1)*tunNRepeats
        
        'Now we need to grid the values out into two appropriate tunValues and tunValuesIndices (the randomizer bit)
        GridStimuli(tun1Values[],tun2Values[],tun1NValues%,tun2NValues%,tun1ValuesIndices%[],tun2ValuesIndices%[],tunCRGProgression%,tunCRGNRepeats%);
        
        'StringifyProgression$ will work just fine on tun1/2Values and tun1/2ValuesIndices
        tun1ValuesStringified$ := StringifyProgression$(tun1NValues%*tun2NValues%*tunCRGNRepeats%, tun1Values[], tun1ValuesIndices%[]);
        if tuntype1$ = tunTypeCRG$ then 'but we need to call a "special" stringify function if CRG on secondary screen
            tun2ValuesStringified$ := StringifyProgressionCRG2$(tun1NValues%*tun2NValues%*tunCRGNRepeats%, tun2Values[], tun2ValuesIndices%[], tun1Values[], tun1ValuesIndices%[]);
        else
            tun2ValuesStringified$ := StringifyProgression$(tun1NValues%*tun2NValues%*tunCRGNRepeats%, tun2Values[], tun2ValuesIndices%[]);
        endif;
        
        
    case tunType$ = tunTypeDanish$ then 
        DoSampleAutoName(key$,"dan","dan",masterTxt$,slaveTxt$);
        
        tunNAdvances% := tunDanishNSteps%;
        tunNRepeats% := tunDanishNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics
        if tunDanishIncludeBlank% = 0 then
            GetRepeatedParameterProgression%(tunDanishNSteps%+1, tunDanishNRepeats%, tunValues[], tunValuesIndices%[], tunDanishMinOuterDiameter, tunDanishMaxOuterDiameter, 1, tunDanishProgression%); 
            tunNValues% := (tunDanishNSteps%+1)*tunDanishNRepeats%;
        else  'include blank, include one blank of "0" per tuning cycle, 0 will result in no donut being drawn
            GetRepeatedParameterProgressionWithConstant%(tunDanishNSteps%+1, 1, 0, tunDanishNRepeats%, tunValues[], tunValuesIndices%[], tunDanishMinOuterDiameter, tunDanishMaxOuterDiameter, 1, tunDanishProgression%); 
            tunNValues% := (tunDanishNSteps%+2)*tunDanishNRepeats%;
        endif        
        
        tunValuesStringified$ := StringifyProgression$(tunNValues%, tunValues, tunValuesIndices%);  
        
        
    case tunType$ = tunTypeGonzago$ then     
        DoSampleAutoName(key$,"gz","gz",masterTxt$,slaveTxt$);
        
        'By definition, tuntype1 is contrast (on the core)  
        GetRepeatedParameterProgression%(tunGonzagoCoreContrastNSteps%+1, 1, tun1Values[], tun1ValuesIndices%[], tunGonzagoMinContrast, tunGonzagoMaxContrast, 1, 0);
        tun1NValues% := 2*(tunGonzagoCoreContrastNSteps%+1);  'By mutiplying the NValues by 2, we trick GridStimuli into gridding out the zeros that fill the empty parts of tun1Values[]

        
        'By definition, tuntype2 is area (on the donut)
        GetRepeatedParameterProgression%(tunGonzagoDonutAreaNSteps%+1, 1, tun2Values[], tun2ValuesIndices%[], tunGonzagoMinOuterDiameter, tunGonzagoMaxOuterDiameter, 1, 0);
        tun2NValues% := 2*(tunGonzagoDonutAreaNSteps%+1);   'By mutiplying the NValues by 2, we trick GridStimuli into gridding out the zeros that fill the empty parts of tun2Values[]

        
        tunNRepeats% := tunGonzagoNRepeats%*(1+tunDoOpto%);  'double number of blocks if doing optogenetics   
        tunNAdvances% := tun1NValues%*tun2NValues%-1;  'this gives the correct number of advances
        tunNValues% := tun1NValues%*tun2NValues%*tunGonzagoNRepeats%;  'now used in idle loop instead of (tunNAdvances%+1)*tunNRepeats
        
        'Now we need to grid the values out into two appropriate tunValues and tunValuesIndices (the randomizer bit)
        GridStimuli(tun1Values[],tun2Values[],tun1NValues%,tun2NValues%,tun1ValuesIndices%[],tun2ValuesIndices%[],tunGonzagoProgression%,tunGonzagoNRepeats%); 
        
        'StringifyProgression$ will work just fine on tun1/2Values and tun1/2ValuesIndices
        tun1ValuesStringified$ := StringifyProgression$(tun1NValues%*tun2NValues%*tunGonzagoNRepeats%, tun1Values[], tun1ValuesIndices%[]);
        tun2ValuesStringified$ := StringifyProgression$(tun1NValues%*tun2NValues%*tunGonzagoNRepeats%, tun2Values[], tun2ValuesIndices%[]);
        
        
    case tunType$ = tunTypeDSS$ then
        DoSampleAutoName(key$,"dss","dss",masterTxt$,slaveTxt$);
        
        tunNValues% := tunDSSNTrials%;   '*(1+tunDoOpto%);  'double number of blocks if doing optogenetics?????  Not sure how that would work with DSS.  If it's ever a question we'll have to work that logic out, but it might not ever be...
        od := GetDonutOD();  'get the outer diameter of the donut
        'ArrConst(tunValues[0],od); 'only need to assign the outer diameter for index 0, that's all we'll access
        tunValues[0] := od;  'weird - the above line doesn't work due to "incompatible procedure types"!
        ArrConst(tunValuesIndices%[0:tunNValues%],0);  'fill tunValuesIndices% with 0 to index tunNValues% (should be zeroes but whatever) 
        
        tunValuesStringified$ := StringifyProgression$(tunNValues%, tunValues, tunValuesIndices%); 
        
        'hard code pReward to 1, logic is different for DSS
        pReward := 1;
        'tunUseMaintainMode% := 0;  'also hard code tunUseMaintainMode%, this could be 1 once that's implemented, but NOT 3/4
        
        
    else    
        DoSampleAutoName(key$,"tun","tun",masterTxt$,slaveTxt$);
    endcase;
    
    
    SampleAutoFile(1);
    
    ' Text marks make extraction easier
    SampleTextMark(200);  'Channel 30 is textmark channel
    
    ' These channels indicate a stim is armed when using dual rigs
'    if tunDoRivalry% <> 0 then
'        
'        SampleEvent(98, 5, 2, 3600);
'        SampleComment$(98, "Marmed");
'        SampleTitle$(98, "Marmed");
'
'        SampleEvent(99, 5, 2, 3600);
'        SampleComment$(99, "Sarmed");
'        SampleTitle$(99, "Marmed");
'        
'    endif
    

	'Channel recording definitions
    
   	SampleEvent(FrameChannel%, 0, 2, 3600);
	SampleComment$(FrameChannel%,"Frame");
	SampleTitle$(FrameChannel%,"Frame");

	SampleEvent(ReadyChannel%, 1, 2, 3600); 'Trigger channel, level
	SampleComment$(ReadyChannel%,"Ready");
	SampleTitle$(ReadyChannel%,"Ready");
    
	SampleEvent(FixationPointChannel%, 2, 2, 3600); 'Trigger channel, level
	SampleComment$(FixationPointChannel%,"Fixpt");
	SampleTitle$(FixationPointChannel%,"Fixpt");
	
	SampleEvent(StimChannel%, 3, 2, 3600); 'Trigger channel, level
	SampleComment$(StimChannel%,"Stim");
	SampleTitle$(StimChannel%,"Stim");
    
	SampleEvent(FrameSlaveChannel%, 4, 2, 3600);
	SampleComment$(FrameSlaveChannel%,"Frame-Slave");
	SampleTitle$(FrameSlaveChannel%,"Frame-Slave");
    
	SampleEvent(ReadySlaveChannel%, 5, 2, 3600); 'Trigger channel, level
	SampleComment$(ReadySlaveChannel%,"Ready-Slave");
	SampleTitle$(ReadySlaveChannel%,"Ready-Slave");
    
    ' djs Add channels to capture slave fixpt and stim onset
	SampleEvent(FixationPointSlaveChannel%, 6, 2, 3600); 'Trigger channel, level
	SampleComment$(FixationPointSlaveChannel%,"Fixpt-Slave");
	SampleTitle$(FixationPointSlaveChannel%,"Fixpt-Slave");
	
	SampleEvent(StimSlaveChannel%, 7, 2,3600); 'Trigger channel, level
	SampleComment$(StimSlaveChannel%,"Stim-Slave");
	SampleTitle$(StimSlaveChannel%,"Stim-Slave");
    
    
    'Add a digital marker channel for pulsing optogenetics
    'Do it for every opto, easy enough to add this into the wraparound calls in the PLS
    'Will record a '1' for laser on and a '0' for laser off
    if tunDoOpto% = 1 then
        SampleDigMark(20);  '20 Hz should be plenty high for an expected sustained rate
        SampleTitle$(DigitalLaserChannel%,"Laser On");
    endif
    
    'Add a waveform channel for efference copy.  This can come from either the 1401 itself or
    'from the stimulator, it doesn't really matter.
    'It would be nice to have these as level channels on event inputs, but that does not fly with the VSG box. (Several months later, I do not know how to interpret that comment...jj)
    if tunOptoUsePulse% = 1 and tunDoOpto% = 1 then
        SampleWaveform(OptoCopyChannel%,31,5000);  'on adc31, which is Henry's max, hardcoded for now
        SampleTitle$(OptoCopyChannel%, "OptoCopy");
    endif;
    
    
    if tunButtonCollect% = 1 then
'        SampleWaveform(ButtonChannel%,ButtonPort%,10000);  'Giving 0.1 ms resolution for now
'        SampleComment$(ButtonChannel%,"Raw Button");
'        SampleTitle$(ButtonChannel%,"Raw Button");
        SampleWaveform(ButtonChannel%, ButtonPort%, 1000);
        'SampleTitle$(XChannel%,"V");   '??? WTF ???  Would have been overwritten by later command setting up eye channels anyway -jj 9/22/16
        SampleTitle$(ButtonChannel%,"Button");  'We ought to title the button channel something, right? -jj 9/22/16
    endif;    
    
    
    'if we are recording the laser output, turn off any electrode channels
    'this will not happen currently, as the laser diode collection has been disabled at the dialog box
    'If we re-implement this, test to see if it actually works as intended!
    if tunLaserDiode% = 1 then
        tunNWavemarks% := 0;  'no wavemarks!
        tunNContinuous% := 0;  'no continuous!
        SampleWaveform(1,0,50000);  'on waveform port 0
        SampleTitle$(1,"Diode output (laser)");
    endif;
    
    
    ' Set up channels for sampling electrodes.
    docase
    case UsePlexon% = 1 then  'call Plexon setup function, this will ONLY set up the sampling configuration for the Micro1401 mark II.  The Power1401 will be set up from its own dedicated script in its dedicated Spike2 instance
        CreatePlexonSamplingConfiguration1824Micro(); 'Note that for right now the ONLY Plexon configuration is 18 WaveMark/24 LFP (maximal WMs for 24 LFPs, trust me)
    case UsePlexon7WM15CN% = 1 then  'call 7 wavemark, 15 continuous setup
        CreateElectrodeSamplingConfiguration7WM15CN(); 
    case UsePlexon15WF15WF2k% = 1 then  'call 15 waveform, 15 waveform@2k setup
        CreateElectrodeSamplingConfiguration15WF15WF2k();
    case UsePlexon24WF% = 1 then
        CreateElectrodeSamplingConfiguration24WF(); 
    case JoePlexon1% = 1 then
        CreateJoePlexon1SamplingConfigurationMaster();
    case JoePlexon2% = 1 then
        message("Electrode Configuration JoePlexon2 is not yet implemented!");
        halt;
    else
        ' Electrodes: wavemark/continuous
        ' 12/6/2010
        ' Wavemark channels will be channels # 1-N, waveform N+1 - N+1+M, where there are N wavemark channels
        ' and M waveform channels. 
'        for i% := 0 to tunNWavemarks%-1 do
'            SampleWaveMark(i% + 1, tunWavemarkPorts%[i%], 2000, 34, 15, 28000); ' chan, port, event rate, points, pre-trigger, rate
'            if useCustomLabels% = 1 and CustomLabels$[i%] <> "" then
'                SampleTitle$(i% + 1, CustomLabels$[WavemarkPorts%[i%]] + "WM"); 
'            else 
'                SampleTitle$(i% + 1, "WMrk " + str$(tunWavemarkPorts%[i%])); 
'            endif;
'            'SampleTitle$(i% + 1, "WMrk " + str$(tunWavemarkPorts%[i%]));
'        next
'        for i% := 0 to tunNContinuous%-1 do
'            SampleWaveform(tunNWavemarks% + i% + 1, tunContinuousPorts%[i%], 20000);
'            if useCustomLabels% = 1 and CustomLabels$[i%] <> "" then
'                SampleTitle$(tunNWavemarks% + i% + 1, CustomLabels$[ContinuousPorts%[i%]] + "WF"); 
'            else
'                SampleTitle$(tunNWavemarks% + i% + 1, "Cont " + str$(tunContinuousPorts%[i%]));
'            endif;
'            'SampleTitle$(tunNWavemarks% + i% + 1, "Cont " + str$(tunContinuousPorts%[i%]));
'        next
        CreateElectrodeSamplingConfiguration32(1, 1+numWavemarkPorts%, ExcludedChans%);  'Allows a lot of channels while preventing accidentally re-defining a channel

    endcase;
    
        
	SampleWaveform(XChannel%, GetEyeXPort%(), 1000);
	SampleTitle$(XChannel%,"Eye X");
	SampleWaveform(YChannel%, GetEyeYPort%(), 1000);
	SampleTitle$(YChannel%,"Eye Y");
    
	SampleSequencer(script$ + "Tuning.pls");
	docase
    case UsePlexon% = 1 then  'Set optimise mode (do this last, so it's outside of the CreatePlexonSamplingConfiguration... functions)
        SampleOptimise(0,1,4,0,0,0,0);  'for the Micro 1401 mk II: manually set sampling timing, group channels with same ideal rate, micro1401, unused, unused, do not disable for compatibility, no burst mode
    case JoePlexon1% = 1 or JoePlexon2% = 1 then
        SampleOptimise(0,1,4,0,0,0,0);  'copying the micro settings...not necessarily the be-all end-all, just trying to see if anything works
    case UsePlexon15WF15WF2k% = 1 or UsePlexon24WF% = 1 then 
        SampleOptimise(2,2,9,1,50,0,1);  'for big-data, need to set for burst mode, Power1401-3 setting is not clear because help does not list it.  9?  8 for micro1401-3?
    else
        SampleOptimise(2,2,Get1401Type%(),2,50);  'otherwise: full optimize timing, channels may have different rates, Power1401 (lowest common denominator, so eh), low usPerTime of 2, high usPerTime of 50
    endcase;
	SampleMode(1); 'Continuous sampling
    
end;

' Used to hard-quit from toolbar. This will close data files without saving!!! 
' It is important that this function be disabled once sampling is started!!!

func Quit%()
	FileClose(-1,-1);
	return 0;
end;

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Stop%()
    var i%, j%, m%;
    var chanToExport%[30];
    var fn$;
    var mylen%;
    
	' Disable idle process func
	ToolbarSet(0,"");
    
    'turn off opto just in case it might be on (it shouldn't, but...)
    if tunDoOpto% = 1 then
        SafeSampleKey("o");
    endif;
    
    ' Tell stim app to shut down.
    ' DJS - removed the 'X' sample key here. 
    ' In general this X cannot be seen by the vsg application if neither stim is up,
    ' which is the case at the end of an expt for example. In dual stim configuration,
    ' that leads to the script hanging, because the sequencer is waiting for the vsg
    ' app to set its "ready" bits, which will never get set.... 
    ' extraneous X?    SafeSampleKey("X");
	SafeSampleKey("Q");
	SampleStop();
    
    if tunDoRivalry% = 0 then
        ProgKill(StimHandle%);
        while ProgStatus(StimHandle%) > 0 do
            Yield();
        wend
    else
        ProgKill(StimHandle%);
        while ProgStatus(StimHandle%) > 0 do
            Yield();
        wend
        ProgKill(StimHandleSlave%);
        while ProgStatus(StimHandleSlave%) > 0 do
            Yield();
        wend
    endif
    
'	ProgRun(bin$ + "\\ClearTrigger",0);
    
    'For some reason, Tuning never had Matlab export set up before the Plexon update...
    '''As of now, Henry does not want there to be .mat file output on tuning (3/21/16 jj) 
    '''Not sure whether Joe will want it or not - we might have to make it an option    
    '''Note that I've updated the syntax here in other code to make sure the eye channels
    '''actually come out, check CuedAtten.s2s for details
'    View(DataWindow%);
'    ExportChanList(); 
'    chanToExport%[1] := 30;  'channels to export go in elements 1:...'30 is the textmark channel
'    chanToExport%[2] := 31;  '31 is the keyboard channel
'    chanToExport%[3] := StimChannel%;  'stim channel
'    docase
'    case UsePlexon% = 1 then  'use hardcoded Plexon values - 18 WaveMarks and 24 LFPs for now, on the micro it's 
'        for i% := 0 to 12 do
'            chanToExport%[i%+4] := i%+1;  'wavemark channels are in order
'        next;
'        chanToExport%[0] := 3+i%;  'total number of channels goes in element 0
'    case UsePlexon7WM15CN% = 1 then  'use hardcoded Plexon values - 7 WaveMarks and 15 LFPs
'        for i% := 0 to 13 do
'            chanToExport%[i%+4] := i%+1;  'wavemark channels are in order
'        next;
'        for i% := 14 to 21 do
'            chanToExport%[i%+4] := i%+3;  'wavemark channels are in order, but we're skipping eye channels
'        next;
'        chanToExport%[0] := 3+i%;  'total number of channels goes in element 0
'    else
'        for i% := 0 to NumWavemarkPorts% do
'            chanToExport%[i%+4] := i%+1;  'wavemark channels are in order
'        next;
'        chanToExport%[0] := 3+i%;  'total number of channels goes in element 0
'    endcase;
'    
'    ExportChanList(0,view(datawindow%).maxtime(),chanToExport%[]);
'    
'    'Code for putting other various channels into the Matlab extraction, Ben doesn't want them but they will be useful for other code    
'    ExportChanList(0,maxtime(),XChannel%);  'Eye position channel, X
'    ExportChanList(0,maxtime(),YChannel%);  'Eye position channel, Y
'    'for i% := 0 to NumWavemarkPorts%-1 do
'    '    ExportChanList(0,maxtime(),i%+1);  'Wavemark channel(s)
'    'next;
'    
'    
'    fn$ := FileName$();  'get current file name
'    mylen% := Len(fn$);
'    fn$ := Left$(fn$,mylen%-4);
'    fn$ := fn$ + ".mat";
'    FileSaveAs(fn$,100,0,"",0,"UseSName=0"); 'Do not overwrite the .mat file - should have a different name and if it doesn't that is a red flag    
    
    
    
    
	' Write parameter file
	WriteParameterFile();

	' Increment daily totals and save then
	TotalTrials% += nTrialsStarted%;
	TotalRewards% += nTrialsCompleted%;
	SaveDailyTotals();
    
    ' Figure out max F1 values
    if tunDoF12% = 1 then
        for i% := 0 to tunNWavemarks%-1 do
            m% := Max(tunF1Sum[i%][]);
            LogStatus("F1 Max", "Channel " + str$(i%+1) + " Port " + str$(tunWavemarkPorts%[i%]) + " max F1 at x=" + str$(tunValues[m%]));
        next
    endif    

end;

'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc WriteParameterFile()
	var parFileName$;
	var parFileBase$;
	var parHandle%;
    var tempPrimary$;
    var tempSecondary$;

	' get filename for parfile (data file + "par" extension) and open it
	View(DataWindow%);
	parFileBase$ := FileName$(1) + FileName$(2) + FileName$(3) + FileName$(4);
	parFileName$ := parFileBase$ + ".par";
	PrintLog("par filename is " + parFileName$ + "\n");
	parHandle% := FileOpen(parFileName$, 8, 1);

	' write general info - eye coil gains, dist to screen
	Print("Tuning parameters for %s\n\n", parFileBase$);

	Print("General information\n");
	Print("-------------------\n\n");
	Print("Distance to screen (MM)    : %s\n", GetDistanceToScreenMM$());
	Print("Eye coil software gain (X) : %f\n", DegreesPerVoltX);
	Print("Eye coil software gain (Y) : %f\n", DegreesPerVoltY);
	Print("Eye coil sampling freq (Hz): %d\n", EyeCoilSamplingFrequency%);
    Print("Wavemark ports             : %s\n", GetWavemarkPorts$());
    Print("Continuous ports           : %s\n", GetContinuousPorts$());
	Print("Reward size (ms)           : %d\n", GetJuiceRewardMS%());
	Print("Background color           : %s\n", tunBackgroundColor$);

	' write fixpoint parameters
	Print("\nFixation point\n");
	Print("-------------------\n\n");
	Print("Window radius              : %f\n", WindowRadius);
	Print("Position (x, degrees)      : %f\n", FixationX);
	Print("Position (y, degrees)      : %f\n", FixationY);
	Print("Diameter (degrees)         : %f\n", FixationDiameter);
	Print("Color                      : %s\n", FixationColor$);

	' write stimulus parameters
	var Tstimstr$;
	var Tstimx$, Tstimy$, Tstimw$, Tstimh$, Tstimiw$, Tstimih$, Tstimcontrast$, Tstimsf$, Tstimtf$, Tstimorientation$, Tstimphase$, Tstimcv$, Tstimp$, Tstimap$;
	var i%;
	var Tstepsize;
    var phase;
    Print("\nStimulus\n");  'Master grating
	Print("-------------------\n\n");
	Tstimstr$ := GetGratingParameters$("Stimulus");
	ReadSetup(",",",",",",",",",");
	i% := ReadStr(Tstimstr$, Tstimx$, Tstimy$, Tstimw$, Tstimh$, Tstimiw$, Tstimih$, Tstimcontrast$, Tstimsf$, Tstimtf$, Tstimorientation$, Tstimphase$, Tstimcv$, Tstimp$, Tstimap$);
	if tunSetStationary% = 1 then
        Tstimtf$ := "0";
    endif
    Print("Position (x, degrees)           : %s\n", Tstimx$);
	Print("Position (y, degrees)           : %s\n", Tstimy$);
	Print("Width (degrees)                 : %s\n", Tstimw$);
	Print("Height (degrees)                : %s\n", Tstimh$);
    Print("Inner Width (degrees)           : %s\n", Tstimiw$);
	Print("Inner Height (degrees)          : %s\n", Tstimih$);
	Print("Color: b/w(b),lms-cone(l,m,s)   : %s\n", Tstimcv$);
    Print("Temporal frequency              : %s\n", Tstimtf$);
	Print("Spatial frequency               : %s\n", Tstimsf$);
	Print("Orientation (degrees)           : %s\n", Tstimorientation$);
    Print("Initial Phase (degrees)         : %s\n", Tstimphase$);
	Print("Contrast (%%)                    : %s\n", Tstimcontrast$);
	Print("Aperture: ellipse(e)/square(q)  : %s\n", Tstimap$);
	Print("Type: sine (s)/square (q)       : %s\n", Tstimp$);
    
    if tunDoRivalry% = 1 then  'Do slave grating only if we're using it
        Print("\Slave Stimulus\n");  'Slave grating
        Print("-------------------\n\n");
        Tstimstr$ := GetGratingParameters$("SlaveStimulus");
        ReadSetup(",",",",",",",",",");
        i% := ReadStr(Tstimstr$, Tstimx$, Tstimy$, Tstimw$, Tstimh$, Tstimiw$, Tstimih$, Tstimcontrast$, Tstimsf$, Tstimtf$, Tstimorientation$, Tstimphase$, Tstimcv$, Tstimp$, Tstimap$);
        if tunSetStationary% = 1 then
            Tstimtf$ := "0";
        endif
        Print("Position (x, degrees)           : %s\n", Tstimx$);
        Print("Position (y, degrees)           : %s\n", Tstimy$);
        Print("Width (degrees)                 : %s\n", Tstimw$);
        Print("Height (degrees)                : %s\n", Tstimh$);
        Print("Inner Width (degrees)           : %s\n", Tstimiw$);
        Print("Inner Height (degrees)          : %s\n", Tstimih$);
        Print("Color: b/w(b),lms-cone(l,m,s)   : %s\n", Tstimcv$);
        Print("Temporal frequency              : %s\n", Tstimtf$);
        Print("Spatial frequency               : %s\n", Tstimsf$);
        Print("Orientation (degrees)           : %s\n", Tstimorientation$);
        Print("Initial Phase (degrees)         : %f\n", Tstimphase$);
        Print("Contrast (%%)                    : %s\n", Tstimcontrast$);
        Print("Aperture: ellipse(e)/square(q)  : %s\n", Tstimap$);
        Print("Type: sine (s)/square (q)       : %s\n", Tstimp$);  
    endif;        
    
    if tunType$ = tunTypeDanish$ or tunType$ = tunTypeDSS$ then  'Do donut grating only if we're using it
        Print("\Donut Stimulus\n");  'Donut grating
        Print("-------------------\n\n");
        Tstimstr$ := GetGratingParameters$("Distractor1");
        ReadSetup(",",",",",",",",",");
        i% := ReadStr(Tstimstr$, Tstimx$, Tstimy$, Tstimw$, Tstimh$, Tstimiw$, Tstimih$, Tstimcontrast$, Tstimsf$, Tstimtf$, Tstimorientation$, Tstimphase$, Tstimcv$, Tstimp$, Tstimap$);
        if tunSetStationary% = 1 then
            Tstimtf$ := "0";
        endif
        Print("Position (x, degrees)           : %s\n", Tstimx$);
        Print("Position (y, degrees)           : %s\n", Tstimy$);
        Print("Width (degrees)                 : %s\n", Tstimw$);
        Print("Height (degrees)                : %s\n", Tstimh$);
        Print("Inner Width (degrees)           : %s\n", Tstimiw$);
        Print("Inner Height (degrees)          : %s\n", Tstimih$);
        Print("Color: b/w(b),lms-cone(l,m,s)   : %s\n", Tstimcv$);
        Print("Temporal frequency              : %s\n", Tstimtf$);
        Print("Spatial frequency               : %s\n", Tstimsf$);
        Print("Orientation (degrees)           : %s\n", Tstimorientation$);
        Print("Initial Phase (degrees)         : %f\n", Tstimphase$);
        Print("Contrast (%%)                    : %s\n", Tstimcontrast$);
        Print("Aperture: ellipse(e)/square(q)  : %s\n", Tstimap$);
        Print("Type: sine (s)/square (q)       : %s\n", Tstimp$);  
    endif;
    
	Print("\nExperimental parameters\n");
	Print("-------------------------\n\n");

	'Print("Fixation time(s)       : %f\n", tunFixationDuration);  'cleaning these up!
	'Print("Maintain fixation (s)  : %f\n", tunMaintainFixation);
	'Print("Time out (s)           : %f\n", tunTimeOutTime);
	'Print("Acquisition time (s)   : %f\n", tunAcquisitionTime);
    Print("Stimulus Duration(s)   : %f\n", tunFixationDuration);
	Print("Maintain fixation (s)  : %f\n", tunMaintainFixation);
	Print("Time out (s)           : %f\n", tunHoldFailTime);
	Print("Acquisition time (s)   : %f\n", tunAcquisitionTime);
    Print("Stationary is set to   : %f\n", tunSetStationary%);
    
	Print("\nTuning parameters\n");
	Print("-------------------\n\n");
	docase 
		case tunType$ = tunTypeContrast$ then

			Print("Type:                  : Contrast\n");
			Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunContrastMinContrast, tunContrastMaxContrast, tunContrastNSteps%, tunContrastNRepeats%);
            if tunContrastDualScreenCombo% = 0 then
                Print("Values: " + tunValuesStringified$ + "\n");
            else
                Print("Master Values: " + tun1ValuesStringified$ + "\n");
                Print("Slave Values: " + tun2ValuesStringified$ + "\n");
            endif;
			Print("\n");


		case tunType$ = tunTypeOrientation$ then

			Print("Type:                  : Orientation\n");
			Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunOriMinOrientation, tunOriMaxOrientation, tunOriNSteps%, tunOriNRepeats%);
			Print("Values: " + tunValuesStringified$ + "\n");
			Print("\n");

		case tunType$ = tunTypeSpatial$ then

			Print("Type:                  : Spatial Frequency\n");
			Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunSpatialMinSF, tunSpatialMaxSF, tunSpatialNSteps%, tunSpatialNRepeats%);
			Print("Values: " + tunValuesStringified$ + "\n");
			Print("\n");
	
		case tunType$ = tunTypeTemporal$ then

			Print("Type:                  : Temporal Frequency\n");
			Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunTemporalMinTF, tunTemporalMaxTF, tunTemporalNSteps%, tunTemporalNRepeats%);
			Print("Values: " + tunValuesStringified$ + "\n");
			Print("\n");

		case tunType$ = tunTypeArea$ then

			Print("Type:                  : Aperture Area\n");
			Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunAreaMinDiam, tunAreaMaxDiam, tunAreaNSteps%, tunAreaNRepeats%);
			if tunAreaDualScreenCombo% = 0 then
                Print("Values: " + tunValuesStringified$ + "\n");
            else
                Print("Master Values: " + tun1ValuesStringified$ + "\n");
                Print("Slave Values: " + tun2ValuesStringified$ + "\n");
            endif;
            Print("\n");
        
        case tunType$ = tunTypeNullTest$ then

			Print("Type:                  : Null Test Counterphase Gratings\n");
			Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunNullTestMinPhase, tunNullTestMaxPhase, tunNullTestNSteps%, tunNullTestNRepeats%);
			Print("Values: " + tunValuesStringified$ + "\n");
            Print("\n");
        
        case tunType$ = tunTypeXPos$ then

			Print("Type:                  : X Position\n");
			Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunXPosMinXPos, tunXPosMaxXPos, tunXPosNSteps%, tunXPosNRepeats%);
			Print("Values: " + tunValuesStringified$ + "\n");
            Print("\n");
        
        case tunType$ = tunTypeXYPos$ then

			Print("Type:                  : XY Position\n");
            Print("MinX,MaxX,#XSteps,#Repeats: %f,%f,%d,%d\n", tunXYPosMinXPos, tunXYPosMaxXPos, tunXYPosNXSteps%, tunXPosNRepeats%);
            Print("MinY,MaxY,#YSteps,#Repeats: %f,%f,%d,%d\n", tunXYPosMinYPos, tunXYPosMaxYPos, tunXYPosNYSteps%, tunXPosNRepeats%);
            Print("XValues: " + tun1ValuesStringified$ + "\n");
            Print("YValues: " + tun2ValuesStringified$ + "\n");
            Print("\n");        
        
        case tunType$ = tunTypeDisparity$ then

			Print("Type:                  : Disparity\n");
			Print("Center,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunDisparityCenterXPos, tunDisparityMaxXPos, tunDisparityNSteps%, tunDisparityNRepeats%);
			Print("Values: " + tunValuesStringified$ + "\n");
			Print("\n");

		case tunType$ = tunTypeDonut$ then
        
            ' djs - 10/15/2014 - Added Optimal diameter to parameter file
			Print("Type:                  : Donut Area\n");
			Print("Optimal,Min,Max,#Steps,#Repeats: %f,%f,%f,%d,%d\n", tunDonutOptimalDiam, tunAreaMinDiam, tunAreaMaxDiam, tunAreaNSteps%, tunAreaNRepeats%);
			Print("Values: " + tunValuesStringified$ + "\n");
            Print("\n");
        
        case tunType$ = tunTypeBerliner$ then

			Print("Type:                  : Berliner Area\n");
			Print("Optimal,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunDonutOptimalDiam, tunBerlinerMaximalDiam, tunBerlinerNSteps%, tunBerlinerNRepeats%);
			Print("Values: " + tunValuesStringified$ + "\n");
			Print("\n");
        
        case tunType$ = tunTypeBoxODonuts$ then

			Print("Type:                  : Box O' Donuts\n");
			Print("#Repeats: %d\n", tunBoxODonutsNRepeats%);
            Print("\n");
            docase 
                case tunType1$ = tunTypeContrast$ then
            
                Print("Type 1:                  : Contrast\n");
                Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunContrastMinContrast, tunContrastMaxContrast, tunContrastNSteps%, tunContrastNRepeats%);
                Print("Values: " + tun1ValuesStringified$ + "\n");
                Print("\n");
            
            
                case tunType1$ = tunTypeOrientation$ then
            
                Print("Type 1:                  : Orientation\n");
                Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunOriMinOrientation, tunOriMaxOrientation, tunOriNSteps%, tunOriNRepeats%);
                Print("Values: " + tun1ValuesStringified$ + "\n");
                Print("\n");
            
                case tunType1$ = tunTypeSpatial$ then
            
                Print("Type 1:                  : Spatial Frequency\n");
                Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunSpatialMinSF, tunSpatialMaxSF, tunSpatialNSteps%, tunSpatialNRepeats%);
                Print("Values: " + tun1ValuesStringified$ + "\n");
                Print("\n");
            
                case tunType1$ = tunTypeTemporal$ then
            
                Print("Type 1:                  : Temporal Frequency\n");
                Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunTemporalMinTF, tunTemporalMaxTF, tunTemporalNSteps%, tunTemporalNRepeats%);
                Print("Values: " + tun1ValuesStringified$ + "\n");
                Print("\n");
            
                case tunType1$ = tunTypeArea$ then
            
                Print("Type 1:                  : Aperture Area\n");
                Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunAreaMinDiam, tunAreaMaxDiam, tunAreaNSteps%, tunAreaNRepeats%);
                Print("Values: " + tun1ValuesStringified$ + "\n");
                Print("\n");
            
                case tunType1$ = tunTypeXPos$ then
            
                Print("Type 1:                  : X Position\n");
                Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunXPosMinXPos, tunXPosMaxXPos, tunXPosNSteps%, tunXPosNRepeats%);
                Print("Values: " + tun1ValuesStringified$ + "\n");
                Print("\n");
            endcase
        
            docase 
                case tunType2$ = tunTypeContrast$ then
                
                Print("Type 2:                  : Contrast\n");
                Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunContrastMinContrast, tunContrastMaxContrast, tunContrastNSteps%, tunContrastNRepeats%);
                Print("Values: " + tun2ValuesStringified$ + "\n");
                Print("\n");
            
            
                case tunType2$ = tunTypeOrientation$ then
            
                Print("Type 2:                  : Orientation\n");
                Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunOriMinOrientation, tunOriMaxOrientation, tunOriNSteps%, tunOriNRepeats%);
                Print("Values: " + tun2ValuesStringified$ + "\n");
                Print("\n");
            
                case tunType2$ = tunTypeSpatial$ then
            
                Print("Type 2:                  : Spatial Frequency\n");
                Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunSpatialMinSF, tunSpatialMaxSF, tunSpatialNSteps%, tunSpatialNRepeats%);
                Print("Values: " + tun2ValuesStringified$ + "\n");
                Print("\n");
            
                case tunType2$ = tunTypeTemporal$ then
            
                Print("Type 2:                  : Temporal Frequency\n");
                Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunTemporalMinTF, tunTemporalMaxTF, tunTemporalNSteps%, tunTemporalNRepeats%);
                Print("Values: " + tun2ValuesStringified$ + "\n");
                Print("\n");
            
                case tunType2$ = tunTypeArea$ then
            
                Print("Type 2:                  : Aperture Area\n");
                Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunAreaMinDiam, tunAreaMaxDiam, tunAreaNSteps%, tunAreaNRepeats%);
                Print("Values: " + tun2ValuesStringified$ + "\n");
                Print("\n");
                
                case tunType2$ = tunTypeXPos$ then
            
                Print("Type 2:                  : X Position\n");
                Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunXPosMinXPos, tunXPosMaxXPos, tunXPosNSteps%, tunXPosNRepeats%);
                Print("Values: " + tun2ValuesStringified$ + "\n");
                Print("\n");
            endcase
        
        case tunType$ = tunTypeCRG$ then

			Print("Type:                  : Contrast Reversing Grating\n");
			Print("#Repeats: %d\n", tunCRGNRepeats%);
            Print("\n");
        
            if tunCRGOnSlave% = 0 then
                tempPrimary$ := "Master";
                tempSecondary$ := "Slave";
            else
                tempPrimary$ := "Slave";
                tempSecondary$ := "Master";
            endif;
        
                Print(tempPrimary$ + ":                  : CRG\n");
                Print("FramesPerFlip,#Repeats: %d,%d\n", tunCRGFramesPerFlip%, tunCRGNRepeats%);
                Print("SEQFile: " + tunCRGSeqFile$ + "\n");
                Print("Values: " + tun1ValuesStringified$ + "\n");
                Print("\n");        
        
            docase 
                case tunType1$ = tunTypeContrast$ then
            
                Print(tempSecondary$ + ":                  : Contrast\n");
                Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunContrastMinContrast, tunContrastMaxContrast, tunContrastNSteps%, tunContrastNRepeats%);
                Print("Values: " + tun2ValuesStringified$ + "\n");
                Print("\n");
            
            
                case tunType1$ = tunTypeOrientation$ then
            
                Print(tempSecondary$ + ":                  : Orientation\n");
                Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunOriMinOrientation, tunOriMaxOrientation, tunOriNSteps%, tunOriNRepeats%);
                Print("Values: " + tun2ValuesStringified$ + "\n");
                Print("\n");
            
                case tunType1$ = tunTypeSpatial$ then
            
                Print(tempSecondary$ + ":                  : Spatial Frequency\n");
                Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunSpatialMinSF, tunSpatialMaxSF, tunSpatialNSteps%, tunSpatialNRepeats%);
                Print("Values: " + tun2ValuesStringified$ + "\n");
                Print("\n");
            
                case tunType1$ = tunTypeTemporal$ then
            
                Print(tempSecondary$ + ":                  : Temporal Frequency\n");
                Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunTemporalMinTF, tunTemporalMaxTF, tunTemporalNSteps%, tunTemporalNRepeats%);
                Print("Values: " + tun2ValuesStringified$ + "\n");
                Print("\n");
            
                case tunType1$ = tunTypeArea$ then
            
                Print(tempSecondary$ + ":                  : Aperture Area\n");
                Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunAreaMinDiam, tunAreaMaxDiam, tunAreaNSteps%, tunAreaNRepeats%);
                Print("Values: " + tun2ValuesStringified$ + "\n");
                Print("\n");
            
                case tunType1$ = tunTypeXPos$ then
            
                Print(tempSecondary$ + ":                  : X Position\n");
                Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunXPosMinXPos, tunXPosMaxXPos, tunXPosNSteps%, tunXPosNRepeats%);
                Print("Values: " + tun2ValuesStringified$ + "\n");
                Print("\n");
            
                case tunType1$ = tunTypeBlank$ then
            
                Print(tempSecondary$ + ":                  : Blank\n");
                Print("\n");
            
                case tunType1$ = tunTypeGratingOnly$ then
            
                Print(tempSecondary$ + ":                  : Grating Only\n");
                Print("Values: " + tun2ValuesStringified$ + "\n");
                Print("\n");
            
                case tunType1$ = tunTypeCRG$ then
            
                Print(tempSecondary$ + ":                  :CRG\n");
                Print("SEQFile: " + tunCRGSeqFile2$ + "\n");
                Print("Values: " + tun2ValuesStringified$ + "\n");
                Print("\n");
            
            endcase
        
        case tunType$ = tunTypeDots$ then
        
			Print("Type:                  : Dots\n");
			Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunDotsMinOrientation, tunDotsMaxOrientation, tunDotsNSteps%, tunDotsNRepeats%);
			Print("Values: " + tunValuesStringified$ + "\n");
            Print("\n");
        
        case tunType$ = tunTypeDanish$ then

			Print("Type:                  : Danish\n");
			Print("Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunDanishMinOuterDiameter, tunDanishMaxOuterDiameter, tunDanishNSteps%, tunDanishNRepeats%);
			Print("Values: " + tunValuesStringified$ + "\n");
            Print("\n"); 
        
        case tunType$ = tunTypeDSS$ then

			Print("Type:                  : DSS\n");
			Print("#Trials,#Flashes,#Blanks,#FlashesPerReward: %d,%d,%d,%d\n", tunDSSNTrials%, tunDSSNPeriods%, tunDSSNBlanks%, tunDSSNFlashesPerReward%);
            Print("\n");        
        
        
        case tunType$ = tunTypeGonzago$ then
        
            Print("Type:                  : Gonzago\n");
			Print("Core Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunGonzagoMinContrast, tunGonzagoMaxContrast, tunGonzagoCoreContrastNSteps%, tunGonzagoNRepeats%);
            Print("Core Values: " + tun2ValuesStringified$ + "\n");
            Print("Donut Min,Max,#Steps,#Repeats: %f,%f,%d,%d\n", tunGonzagoMinOuterDiameter, tunGonzagoMaxOuterDiameter, tunGonzagoDonutAreaNSteps%, tunGonzagoNRepeats%);
            Print("Donut Values: " + tun1ValuesStringified$ + "\n");
            Print("\n");
        
		else

			Print("TuningCurve Error - unknown value for tunType$: %s\n", tunType$);

	endcase;
    
    if tunDoOpto% = 1 then
        Print("\nOptogenetics parameters\n");
        Print("-------------------------\n\n");
        if tunLaserDiode% = 1 then
            Print("Laser Diode recorded\n");
        endif;
        Print("Opto Voltage Out: %f\n", tunOptoVoltageOut);
        var label$[4]; 
        label$[0] := "Opto Off First";
        label$[1] := "Opto On First";
        label$[2] := "Random First";
        label$[3] := "Opto On All Blocks";
        Print("Order of blocks : %s\n", label$[tunOptoStartState%]);
        if tunOptoUsePulse% = 1 then
            Print("Pulsing Opto selected\n");
            Print("Opto#Pulses,OptoPeriodOnset,OptoPulseWidth,OptoInterpulseInterval: %d,%f,%f,%f\n",tunOptoNPulses%,tunPulsedOptoOnset,tunPulsedOptoWidth,tunPulsedOptoIPI);
        else
            Print("Wraparound Opto selected\n");
            Print("PreStimulusOptoOn,PostStimulusOptoOn,KeepOptoOnBetweenStims: %f,%f,%d\n",tunPreStimOptoTime,tunPostStimOptoTime,tunOptoStaysOn%);
        endif;
        
    endif;    
    
    
	' close parfile
	FileClose(0);

end;


' Gets the temporal freq of the current stimulus. 
' Make sure to call this only after all user dialogs have been completed (so you know that the stim parameters will not change)

func GetStimulusTF()
    var gr$;
    var x, y, w, h, iw, ih, sf, tf, ori, phase;
    var contrast%;
    var cv$, pattern$, aperture$;
    
	if tunType$ = tunTypeNullTest$ then 'get the temporal frequency of the counterphase shift, grating does not drift
        tf := tunNullTestTF;
    else  'get the temporal frequency of the grating
    	gr$ := GetGratingParameters$("Stimulus");
        ParseGratingParameters%(gr$, x, y, w, h, iw, ih, contrast%, sf, tf, ori, phase, cv$, pattern$, aperture$);
    endif;
    
    LogStatus("GetStimulusTF", "TF=" + str$(tf));
    return tf;
end



' Gets the outer diameter of the current stimulus. 
' Make sure to call this only after all user dialogs have been completed (so you know that the stim parameters will not change)
' Please note that although this is called "outer diameter" it is actually returning the width - width and height
' are the same in all cases right now.

func GetDonutOD()
    var gr$;
    var x, y, w, h, iw, ih, sf, tf, ori, phase;
    var contrast%;
    var cv$, pattern$, aperture$;
	gr$ := GetGratingParameters$("Distractor1");
    ParseGratingParameters%(gr$, x, y, w, h, iw, ih, contrast%, sf, tf, ori, phase, cv$, pattern$, aperture$);
    LogStatus("GetDonutOD", "OD=" + str$(w));
    return w;
end




'This is to get ready for each DSS "Trial", which is a series of donut flashes/blanks
'We will NOT re-initialize if the entire number of flashes is not completed
func InitializeDSSTrial(tNow)
    
    tunFixationDuration := 1000000000;  'We will not allow to break out of DSS stimulus until it is over
    tunDSSCurrPeriod% := 0;  ' current period is yet to start
    tunDSSFlashesUntilReward% := 0;  ' reward will come now
    tunDSSIsOn% := 1;  'donut will start in ON state
    ArrConst(tunDSSFlashOrBlank%[0:tunDSSNPeriods%-tunDSSNBlanks%],1);  'fill with correct number of flashes == 1
    ArrConst(tunDSSFlashOrBlank%[tunDSSNPeriods%-tunDSSNBlanks%:tunDSSNBlanks%],0);  'fill with correct number of blanks == 0
    Shuffle%(tunDSSNPeriods%, tunDSSFlashOrBlank%[]);  'And shuffle
    tunNextDSSTime := tNow + tunDSSDuration;
    
end




func StartPlexon%()
    
    
    'Start the Power1401!  This is a bit cumbersome, and I'm not sure it's transferable, but it's a start, perhaps.
    var fp$;  'to hold current file path
    var fp2$;  'to hold destination file path
    fp$ := FilePath$();  'get current file path
    printlog("%s\n",fp$);  'and tell the world what it was
    var fpok%;
    fpok% := FilePathSet("F:/work/AlertRig/Spike2Scripts");  'change the file path (Henry)
    if fpok% <> 0 then
        fpok% := FilePathSet("E:/work/AlertRig/Spike2Scripts");  'change the file path (Joe)
    endif
    if fpok% <> 0 then
        message("Failed to find expected file structure in StartPlexon%()!  Quitting!");
        halt;
    endif
        
    fp2$ := FilePath$();  'read out to allow verification
    printlog("%s\n",fp2$);  'by telling the world about it (hint: it works)
    
    'Must run this BEFORE the PROGRUN command, because both this sequence AND SetPlexon...
    'access the same directory, and this was causing conflicts because they were running
    'simultaneously.  Here, CreateSampleConfiguration is done accessing the directory before
    'SetPlexon... is started, and everything is kosher.
    CreateSampleConfiguration();    
    
    docase
    case UsePlexon% = 1 then
        progrun("sonview.exe /M /u2 SetPlexonRecording1824OnPower1401.s2s");  'run the program, .s2s file is now on default path by design
    case JoePlexon1% = 1 then
        progrun("sonview.exe /M /u2 SetJoePlexon1RecordingOnSlave.s2s");  'run the program, .s2s file is now on default path by design
    case JoePlexon2% = 1 then
        message("Program to start slave 1401 not yet written for Joe2!  Quitting!");
        halt; 
        'This is what we should call the program, then we can just uncomment this line
        'progrun("sonview.exe /M /u2 SetPlexonRecording1824OnPower1401.s2s");  'run the program, .s2s file is now on default path by design
    endcase
    
    FilePathSet(fp$);  'change the file path back to what it was
    fp$ := FilePath$();  'read out to allow verification
    printlog("%s\n",fp$); 'and tell the world to verify
    
    ToolbarSet(1,"Start SECOND",Start%);  'change button 1 on the toolbar, this may not work
    

    ' Get display windows ready
    InitializeWindows();    
    
    return 1; 'stay in toolbar
    
end

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Start%()
	var cmdLine$;
    var cmdLineM$;
    var cmdLineS$;
    var tailM$, tailS$;
    var fileM$, fileS$;
    var Opener$;
    var OpenerM$;
    var OpenerS$;
    var ProgName$;
    var ProgNameM$;
    var ProgNameS$;
    var RemoteArg$:="";     'Extra arg needed if vsg is not on local machine...
    var RemoteArgM$:="";     'Extra arg needed if vsg is not on local machine...
    var RemoteArgS$:="";     'Extra arg needed if vsg is not on local machine...
    var XHairArg$:="";  'Note that all variables are used to construct cmdLine$, if unused, must be empty
    var BGColor$;
    var Dist2Screen$;
    var TriggerPort$;
    var Verbose$:=" -v ";  'For now, verbose is always on
    var RefrLock$:="";
    var OffsetFile$:="";
    var StimDur$:="";
    var MGrat$:=" -s ";
    var SGrat$:=" -s ";
    var DGrat$:="";
    var MGratParam$:="";
	var SGratParam$:="";
    var DGratParam$:="";  'for donut stimulus, uses Distractor1
    var MasterIndicator$:="";  'Do not use Master Indicator
    var SlaveIndicator$:="";  'or Slave Indicator for fixstim, set if needed
    var KlugeArg$:=" -H ";  'this is for a Jerry-rigged "hole" in Box O' Donuts slave stimuli 
    var MValues$:="";
    var SValues$:="";   
    var S2Values$:="";  'won't be used except for Box O' Donuts 
    var KlugeValues$:="";  'this is for a Jerry-rigged "hole" in Box O' Donuts slave stimuli
    var MConstantLag$:="";  
    var SConstantLag$:=""; 
    var key$;
    var i%;
    'var CRGPrimaryArg$;  'This is always "-R", hard code
    var CRGPrimaryValues$;
    var CRGSecondaryArg$;
    var CRGSecondaryValues$;
    'vars for opto setup
    var voltageInteger%;
    var stimRemaining;
    stimRemaining := tunFixationDuration;
    var tempNPulses%;
    var tempCount%;
    var tempSeqVarValue;
    var tempSeqVarValue%;
    
    
    
	
	'start sampling
    if UseTwo1401s% = 1 then
        SampleStart(1);  'set sampling to start on a trigger
    else
    	SampleStart(0); 'Start sampling now
    endif;
    
    ' djs Set sequencer variable 5 if this is rivalry
    if tunDoRivalry% = 1 then
        SampleSeqVar(5, 1);
    else
        SampleSeqVar(5, 0);
    endif
    
	' Set Sequencer Variable #3 based on juicer type 
    SetJuicerSequencerVariable%();
    ' Clear any trigger bits on digout lines.
    SafeSampleKey("0");
    
    SequencerPeriodMS := SampleSeqClock(1);  'Get the clock period of the sequencer, in MS, must do this after starting sampling
    
    if tunDoOpto% = 1 then
        'set sequencer variable 4 for opto voltage
        'Please note that the input for this has to be a 32-bit variable. Use vdac32% to get the right value.
        voltageInteger% := vdac32%(tunOptoVoltageOut, 1, 0);
        SampleSeqVar(4,voltageInteger%);
        printlog("Voltage integer is %d\n",voltageInteger%);
        
        'If pulsing, because the user could have changed the duration of the stimulus after setting the opto
        'parameters, we need to check the parameters again (even though the opto dialog box did it already)
        if tunOptoUsePulse% = 1 then
            
            
            stimRemaining := stimRemaining - tunPulsedOptoOnset;  'duration of stimulus after onset delay
            stimRemaining := stimRemaining - tunPulsedOptoWidth;  'duration of stimulus after first opto pulse
            if stimRemaining < 0 then  'if first pulse will extend beyond stimulus duration
                tunOptoNPulses% := 0;  'turn off opto by using no pulses
                'tell user they blew it
                Message("The first opto pulse will extend beyond the stimulus!  Quitting!!!");
                Quit%();
            else
                tempNPulses% := tunOptoNPulses% - 1;  'how many more pulses are left?
                tempCount% := 1;  'temporary successful pulse count
                while tempNPulses% > 0 do
                    stimRemaining := stimRemaining - tunPulsedOptoWidth - tunPulsedOptoIPI;  'subtract duration of one more pulse+IPI
                    if stimRemaining < 0 then  'if this pulse will extend beyond stimulus duration
                        Message("Due to stimulus length, only " + Str$(tempCount%) + " pulses can be completed!");
                        tunOptoNPulses% := tempCount%;  'only use this many pulses if user does not recalculate
                        stimRemaining := stimRemaining + tunPulsedOptoWidth + tunPulsedOptoIPI;  'add back duration of one more pulse+IPI, gets actual stimulus duration remaining
                        tempNPulses% := 0;  'break while
                    else  'if this pulse is OK
                        tempCount% += 1;  'increment temporary successful pulse count
                    endif;
                    tempNPulses% -= 1;  'decrement temporary pulse count remaining
                wend
            endif;
        endif;
        
        'If pulsing, set sample sequencer variables
        if tunOptoUsePulse% = 1 then  'yes, this is the same "if" as above, just seems cleaner this way
            SampleSeqVar(6,tunOptoNPulses%);  'set number of pulses
            printlog("Opto N pulses is %d\n",tunOptoNPulses%);
            'For below calculations, the standard numbers we are getting are in seconds, sequencer period is in MS (because that's how it comes)
            
            tempSeqVarValue := tunPulsedOptoWidth*1000/SequencerPeriodMS;  'do math in float
            tempSeqVarValue% := tempSeqVarValue-2;  'now convert to integer, subtract two ticks for sequencer instructions
            SampleSeqVar(7,tempSeqVarValue%);  'set duration of pulse in clock ticks
            printlog("Opto width is %d\n",tempSeqVarValue%);
            
            tempSeqVarValue := tunPulsedOptoIPI*1000/SequencerPeriodMS;  'do math in float
            tempSeqVarValue% := tempSeqVarValue-3;  'now convert to integer, subtract three ticks for sequencer instructions
            SampleSeqVar(8,tempSeqVarValue%);  'set interpulse interval in clock ticks
            printlog("Opto IPI width is %d\n",tempSeqVarValue%);
            
            tempSeqVarValue := tunPulsedOptoOnset*1000/SequencerPeriodMS;  'do math in float
            tempSeqVarValue% := tempSeqVarValue-1;  'now convert to integer, subtract one tick for sequencer instructions
            SampleSeqVar(9,tempSeqVarValue%);  'set pre-pulse stimulus duration in clock ticks
            printlog("Opto onset is %d\n",tempSeqVarValue%);
            
            tempSeqVarValue := stimRemaining*1000/SequencerPeriodMS;  'do math in float
            tempSeqVarValue% := tempSeqVarValue-3;  'now convert to integer, subtract three ticks for sequencer instructions
            SampleSeqVar(10,tempSeqVarValue%);  'set post-pulse stimulus duration in clock ticks
            printlog("Opto remaining time is %d\n",tempSeqVarValue%);
        endif;
        
    endif;
    
    
    
    
    
    'Begin building the command line argument
    Opener$ := "cmd /k " + bin$;
    OpenerM$ := Opener$;
    'OpenerS$ := "cmd/k D:\\work\\PsTools\\psexec \\\\192.168.1.2 -w c:\\work -i -f -c " + bin$;
    OpenerS$ := "cmd /k " + bin$;
    
    ' Get remote args if needed
    if GetUseRemoteStimulus%() = 1 then
        RemoteArg$  := " " + GetRemoteStimulusIP$() + " " + GetRemoteStimulusPort$() + " fixstim ";
        RemoteArgM$ := " " + GetRemoteStimulusIP$() + " " + GetRemoteStimulusPort$() + " fixstim ";
        RemoteArgS$ := " " + GetSlaveStimulusIP$() + " " + GetSlaveStimulusPort$() + " fixstim ";
    endif;
    
    
    'Get grating parameters, do this first so we can clear the SGratParam$ if Slave monitor is unused
    if tunSetStationary% = 0 then
        ' Stimulus is always used
        MGratParam$ := GetGratingParameters$("Stimulus");
        ' Slave Stimulus is not always used, but get it anyway
        SGratParam$ := GetGratingParameters$("SlaveStimulus");
    else
        ' Stimulus is always used
        MGratParam$ := GetGratingParameters$("StatStimulus");
        ' Slave Stimulus is not always used, but get it anyway
        SGratParam$ := GetGratingParameters$("StatSlaveStimulus");
    endif;    
    
    'Set rivalry options
    if tunDoRivalry% = 0 then
        RefrLock$ := "";  'do not lock frame refresh
        if GetUseRemoteStimulus%() = 1 then
            ProgName$ := "\\remote.exe "; 'set program name for one VSG
        else
            ProgName$ := "\\fixstim.exe "; 'set program name for one VSG
        endif;
        
        'I don't really like doing this (in principle these should start empty and be filled if they are being
        'used), but I'd have to do another "if tunSetStationary" statement, so this cuts down on total code
        SGrat$ := "";  'clear Slave grating indicator, we won't use it
        SGratParam$ := "";  'clear slave grating parameters, we won't use them
        
    else  'for rivalry (dualstim.exe), we need some extra commands that must be empty for a fixstim.exe call
    
        ProgName$ := "\\remote.exe ";
        
        ' Fetch the offset filename
        key$ := GetRegistryKey$(1) + "\\Rivalry";
        OffsetFile$ := GetStringRegistryValue$(GetRegistryKey$(1), "OffsetFile", "file_not_found");
'        if OffsetFile$ = "file_not_found" then
'            message("The offset file has not been defined in the registry!  Most likely you have created a new animal config.  Ask Jeff or Dan to update the registry for you!");
'            halt;
'        endif;
        OffsetFile$ := " -r " + OffsetFile$;
        
        ' Fetch the stimulus duration (in dualstim, stimoff is done by counting frames because of VSG frame synching)
        StimDur$ := " -t " + Str$(tunFixationDuration) + " ";  'add stimulus duration in seconds
        
        ' Set monitor indicators, required for Dualstim
        MasterIndicator$ := " -M ";  'master monitor indicator
        SlaveIndicator$ := " -V ";  'slave monitor indicator
    endif;
    
    'Fixation arguments are set by UsreyFixationPoint.s2s and need not be done here
    
    'Set crosshair options, if required
    'if tunUseXHairs% = 1 and (tunType$ = tunTypeBerliner$ or tunType$ = tunTypeDonut$) then 'Construct command line with crosshair argument, only for DUALSTIM, FIXSTIM won't do this (but now anything can be dualstim)
    if tunUseXHairs% = 1 and (tunDoRivalry% > 0) then 'Construct command line with crosshair argument, only for DUALSTIM, FIXSTIM won't do this
        'split XHairArg$ construction into two lines due to length
        'Note that XHair flag has changed to "-h" (from "-X") as of 1-20-12 jj
        XHairArg$ := " -h " + Str$(FixationX) + "," + Str$(FixationY) + "," + Str$(tunXHairInnerRadiusOffset) + "," + Str$(tunXHairMiddleRadiusOffset) + ","; 
        XHairArg$ := XHairArg$ + Str$(tunXHairOuterRadiusOffset) + "," + Str$(tunXHairNumGridDivisions%) + "," + Str$(tunXHairTicInnerOffset) + "," + Str$(tunXHairTicOuterOffset) + " ";
    endif;
    
    'Set background color
    BGColor$ := " -b " + tunBackgroundColor$;
    
    'Set distance to screen
    Dist2Screen$ := " -d " + GetDistanceToScreenMM$();
    
    'Set trigger port
    TriggerPort$ := " -p 2 ";  'This one's hard-coded for now
    
    'Turn on verbose
    Verbose$ := " -v ";
    
    'Set constant lag, will only be used if needed
    if tunType$ <> tunTypeLag$ and tunType1$ <> tunTypeLag$ and tunType2$ <> tunTypeLag$ then  'if we're NOT using a lag tuning curve anywhere....
        tunLagMasterIsLagged% := -1; 'set this to a negative value to avoid any accidental counterfeit from the default value of this variable
    endif;
    docase
    'case tunUseConstantLag% = 1 and tunLagMasterIsLagged% <> 1 then  'master is constant, master does not have a lag tuning curve
    case tunUseConstantLag% = 1 and tunLagMasterIsLagged% = -1 then  'master is constant, nobody is lagged
        MConstantLag$ := " -E " + Str$(tunConstantLagFrames%);
        SConstantLag$ := " -E 0";  'Must use lag on both screens, per Dan, set non-lagged to 0
    'case tunUseConstantLag% = 2 and tunLagMasterIsLagged% <> 0 then  'slave is constant, slave does not have a lag tuning curve
    case tunUseConstantLag% = 2 and tunLagMasterIsLagged% = -1 then  'slave is constant, nobody is lagged
        MConstantLag$ := " -E 0";  'Must use lag on both screens, per Dan, set non-lagged to 0
        SConstantLag$ := " -E " + Str$(tunConstantLagFrames%);
    else  'don't use it, this includes both tunUseConstantLag% = 0 and instances where the lag tuning and constant lag are on the same monitor
        MConstantLag$ := "";
        SConstantLag$ := "";
    endcase
    
    
    
     
    'Get default tuning curve values - these may get changed!
    MValues$ := tunValuesStringified$;  
    
    'Run a case statement to do tuning-curve-specific stuff, this is simple except for Donuts, etc.
	docase 
    case tunType$ = tunTypeContrast$ then
        TunCurveMArg$ := " -C ";
        
        if tunContrastDualScreenCombo% = 0 then
            if tunDoRivalry% = 1 then
                TunCurveSArg$ := " -C ";  'Set slave to run same tuning curve...
                SValues$ := MValues$;  '...with same values as Master tuning curve
                'based on tunDualTuningType%, allows dual to produce tuning curve on both, only master, or only slave
                ClearMasterOrSlaveIfNecessary(SGrat$,SGratParam$,SlaveIndicator$,TunCurveSArg$,SValues$,MGrat$,MGratParam$,MasterIndicator$,TunCurveMArg$,MValues$);  
            endif;
        else
            TunCurveSArg$ := " -C ";
            MValues$ := tun1ValuesStringified$;
            SValues$ := tun2ValuesStringified$;
        endif;
        
   
        
    case tunType$ = tunTypeOrientation$ then
        TunCurveMArg$ := " -O ";

        if tunDoRivalry% = 1 then
            TunCurveSArg$ := " -O ";  'Set slave to run same tuning curve...
            SValues$ := MValues$;  '...with same values as Master tuning curve
            'based on tunDualTuningType%, allows dual to produce tuning curve on both, only master, or only slave
            ClearMasterOrSlaveIfNecessary(SGrat$,SGratParam$,SlaveIndicator$,TunCurveSArg$,SValues$,MGrat$,MGratParam$,MasterIndicator$,TunCurveMArg$,MValues$);  
        endif;

    case tunType$ = tunTypeSpatial$ then
        TunCurveMArg$ := " -S ";

        if tunDoRivalry% = 1 then
            TunCurveSArg$ := " -S ";  'Set slave to run same tuning curve...
            SValues$ := MValues$;  '...with same values as Master tuning curve
            'based on tunDualTuningType%, allows dual to produce tuning curve on both, only master, or only slave
            ClearMasterOrSlaveIfNecessary(SGrat$,SGratParam$,SlaveIndicator$,TunCurveSArg$,SValues$,MGrat$,MGratParam$,MasterIndicator$,TunCurveMArg$,MValues$);  
        endif;

    case tunType$ = tunTypeTemporal$ then
        TunCurveMArg$ := " -T ";

        if tunDoRivalry% = 1 then
            TunCurveSArg$ := " -T ";  'Set slave to run same tuning curve...
            SValues$ := MValues$;  '...with same values as Master tuning curve
            'based on tunDualTuningType%, allows dual to produce tuning curve on both, only master, or only slave
            ClearMasterOrSlaveIfNecessary(SGrat$,SGratParam$,SlaveIndicator$,TunCurveSArg$,SValues$,MGrat$,MGratParam$,MasterIndicator$,TunCurveMArg$,MValues$);  
        endif;

    case tunType$ = tunTypeArea$ then
        TunCurveMArg$ := " -A ";
        
        
        if tunAreaDualScreenCombo% = 0 then
            if tunDoRivalry% = 1 then
                TunCurveSArg$ := " -A ";  'Set slave to run same tuning curve...
                SValues$ := MValues$;  '...with same values as Master tuning curve
                'based on tunDualTuningType%, allows dual to produce tuning curve on both, only master, or only slave
                ClearMasterOrSlaveIfNecessary(SGrat$,SGratParam$,SlaveIndicator$,TunCurveSArg$,SValues$,MGrat$,MGratParam$,MasterIndicator$,TunCurveMArg$,MValues$);  
            endif;
        else
            TunCurveSArg$ := " -A ";
            MValues$ := tun1ValuesStringified$;
            SValues$ := tun2ValuesStringified$;
        endif;        
        
        
    case tunType$ = tunTypeXPos$ then
        TunCurveMArg$ := " -X ";

        if tunDoRivalry% = 1 then
            TunCurveSArg$ :="  -X ";  'Set slave to run same tuning curve...
            SValues$ := MValues$;  '...with same values as Master tuning curve
            'based on tunDualTuningType%, allows dual to produce tuning curve on both, only master, or only slave
            ClearMasterOrSlaveIfNecessary(SGrat$,SGratParam$,SlaveIndicator$,TunCurveSArg$,SValues$,MGrat$,MGratParam$,MasterIndicator$,TunCurveMArg$,MValues$);  
        endif;
        
    case tunType$ = tunTypeXYPos$ then
        tunCurveMArg$ := " -Z ";
        'tunDoRivalry cannot be 1 in this case because dualstim does not have this function
        
    case tunType$ = tunTypeLag$ then
        'tunDoRivalry will be 1
        if tunLagMasterIsLagged% = 1 then
            TunCurveMArg$ := " -E "; 'lag is -E!
            TunCurveSArg$ := " -E ";  'must use lag on both screens, just make it 0 for slave
            SValues$ := "0";  'lag 0 for slave
        else
            TunCurveMArg$ := " -E "; 'must use lag on both screens, just make it 0 for master
            TunCurveSArg$ := " -E ";
            SValues$ := MValues$;
            MValues$ := "0";  'lag 0 for master
        endif;
        'won't do ClearMasterOrSlave... because there's no point in running lag tuning with an empty screen on the other side
        
    case tunType$ = tunTypeDisparity$ then
        if tunDisparityOnMaster% = 1 then
            TunCurveMArg$ := " -X "; 'do disparity by moving master
            SGrat$ := " -g ";  'Change slave grating variable to -g because it doesn't change
            TunCurveSArg$ := "";  'clear the slave tuning curve argument
            SValues$ := "";  'clear the slave tuning curve values 
        else
            TunCurveSArg$ := " -X "; 'do disparity by moving slave
            SValues$ := MValues$;  'get values from "Master" tuning curve (assigned earlier)
            MGrat$ := " -g ";  'Change master grating variable to -g because it doesn't change
            TunCurveMArg$ := "";  'clear the master tuning curve argument
            MValues$ := "";  'clear the master tuning curve values
        endif;       
        
    case tunType$ = tunTypeDonut$ then
        
        TunCurveMArg$ := " -A ";  'Donuts do area on Master
        TunCurveSArg$ := " -M ";  'And "hole" stimuli on Slave.
        
        ' The args for the stim must be constructed here. 
        var areaArg$, donutArg$;
        for i% := 0 to tunNValues%-1 do
            if tunValues[tunValuesIndices%[i%]] <= tunDonutOptimalDiam then
                areaArg$ += str$(tunValues[tunValuesIndices%[i%]]) + ",";
                donutArg$ += "0,0,";
            else
                areaArg$ += str$(tunDonutOptimalDiam) + ",";
                donutArg$ += str$(tunValues[tunValuesIndices%[i%]]) + "," + str$(tunDonutOptimalDiam) + ",";
            endif
        next
        areaArg$ := Left$(areaArg$, Len(areaArg$)-1);
        donutArg$ := Left$(donutArg$, Len(donutArg$)-1);
        
        'Now put the constructed stim sets into standard variables
        MValues$ := areaArg$;
        SValues$ := donutArg$;
        
        ' Now if the core should be on the slave, we swap tunCurveMArg$/tunCurveSArg$ and MValues$/SValues$
        if tunDonutCoreOnSlave% <> 0 then
            var sd$;
            sd$ := tunCurveMArg$;
            TunCurveMArg$ := TunCurveSArg$;
            TunCurveSArg$ := sd$;
            sd$ := MValues$;
            MValues$ := SValues$;
            SValues$ := sd$;
        endif
        
    case tunType$ = tunTypeBerliner$ then
        
        TunCurveMArg$ := " -A ";  'Donuts do area on Master
        TunCurveSArg$ := " -M ";  'And "hole" stimuli on Slave
        
        ' The args for the stim must be constructed here. 
        var areaArgBerliner$, donutArgBerliner$; 
        for i% := 0 to tunNValues%-1 do
            docase
            case tunValues[tunValuesIndices%[i%]] = 1 then  'stim 1 is optimal center on master, no donut on slave
                areaArgBerliner$ += str$(tunDonutOptimalDiam) + ",";
                donutArgBerliner$ += "0,0,";
            case tunValues[tunValuesIndices%[i%]] = 2 then  'stim 2 is maximal center on master, no donut on slave
                areaArgBerliner$ += str$(tunBerlinerMaximalDiam) + ",";
                donutArgBerliner$ += "0,0,";   
            case tunValues[tunValuesIndices%[i%]] = 3 then  'stim 3 is optimal center on master, donut one step larger on slave
                areaArgBerliner$ += str$(tunDonutOptimalDiam) + ",";
                donutArgBerliner$ += str$(tunDonutOptimalDiamPlusOne) + "," + str$(tunDonutOptimalDiam) + ","; 
            case tunValues[tunValuesIndices%[i%]] = 4 then  'stim 4 is optimal center on master, maximal donut on slave
                areaArgBerliner$ += str$(tunDonutOptimalDiam) + ",";
                donutArgBerliner$ += str$(tunBerlinerMaximalDiam) + "," + str$(tunDonutOptimalDiam) + ",";   
            case tunValues[tunValuesIndices%[i%]] = 5 then  'stim 5 is optimal center on master, optimal center on slave
                areaArgBerliner$ += str$(tunDonutOptimalDiam) + ",";
                donutArgBerliner$ += str$(tunDonutOptimalDiam) + "," + str$(0) + ","; 
            case tunValues[tunValuesIndices%[i%]] = 6 then  'stim 6 is maximal center on master, maximal center on slave
                areaArgBerliner$ += str$(tunBerlinerMaximalDiam) + ",";
                donutArgBerliner$ += str$(tunBerlinerMaximalDiam) + "," + str$(0) + ",";      
            else
                Message("Error - unknown value for tunValues: " + str$(tunValues[tunValuesIndices%[i%]]));
                Halt;   
            endcase
        next
        areaArgBerliner$ := Left$(areaArgBerliner$, Len(areaArgBerliner$)-1);
        donutArgBerliner$ := Left$(donutArgBerliner$, Len(donutArgBerliner$)-1);
        
        'Now put the constructed stim sets into standard variables
        MValues$ := areaArgBerliner$;
        SValues$ := donutArgBerliner$;   
        
        ' Now if the core should be on the slave, we swap tunCurveMArg$/tunCurveSArg$ and MValues$/SValues$
        if tunBerlinerCoreOnSlave% <> 0 then
            var sb$;
            sb$ := tunCurveMArg$;
            TunCurveMArg$ := TunCurveSArg$;
            TunCurveSArg$ := sb$;
            sb$ := MValues$;
            MValues$ := SValues$;
            SValues$ := sb$;
        endif

        
    case tunType$ = tunTypeBoxODonuts$ then
        'Set slave values, do this first because master values may be set to slave values
        TunCurveSArg$ := " -" + TunType1$ + " ";
        TunCurveS2Arg$ := " -" + TunType2$ + " ";
        SValues$ := tun1ValuesStringified$;
        S2Values$ := tun2ValuesStringified$;
        
        'Set master values, based on whether the master should vary with TunCurve1 on slave or not
        if tunMasterFollowsCurve1% = 0 then        
            MGrat$ := " -g ";  'Change master grating variable to -g because it doesn't change
            TunCurveMArg$ := "";  'clear the tuning curve argument
            MValues$ := "";  'clear the tuning curve values
        else
            'Do not change master grating variable to -G
            TunCurveMArg$ := TunCurveSArg$;  'Set master tuning curve argument same as slave 1
            MValues$ := SValues$;  'Set master tuning curve values same as slave 1
        endif;    
        
        if tunDoRivalry% = 0 then
            MGrat$ := " -s ";  'change this back if we are not doing rivalry...the logic to get this to go is a bit ugly, but...
        endif;
        
        
    case tunType$ = tunTypeGonzago$ then
        'set this up like BoxODonuts
        TunCurveSArg$ := " -" + TunType1$ + " ";
        TunCurveS2Arg$ := " -" + TunType2$ + " ";
        SValues$ := tun1ValuesStringified$;
        S2Values$ := tun2ValuesStringified$;
        
        'we kill this, and just use the "slave" (even though this is not rivalry
        MGrat$ := " -s ";  'Change master grating variable to -g because it doesn't change
        TunCurveMArg$ := "";  'clear the tuning curve argument
        MValues$ := "";  'clear the tuning curve values
        
        
    case tunType$ = tunTypeCRG$ then
        'Assign Primary/Secondary screen values, Secondary tuning curve argument
        ' 
        ' Deal with the confusion over the names of the two screens. 
        ' The "master" and "slave" screens refer to physical screens and do not change. Historically, they were the screens
        ' attached to the "master" and "slave" VSG cards, respectively. Now that we have moved to using dual VisAGE cards
        ' the "master" refers to the Visage on the same machine as the 1401 (the one running this script) resides. The "slave"
        ' refers to the second computer, which holds the second Visage card. 
        ' 
        ' For the CRG we have the notion of the "primary" screen - the one which runs the CRG, and the "secondary" screen, 
        ' which runs the other stim. 
        ' 
        ' There is a problem with the "slave" machine when the args to fixstim require a filename be passed. That machine
        ' MUST have its Z: drive mapped to the "master" machine's D: drive (DATA share). Also, the CRG input files must
        ' reside on the "master" computer's D: drive. When a CRG txt file must be passed as input to the slave machine, 
        ' its filename is modified so that D: becomes Z:, and the file should be found and used. This kinda sucks, and 
        ' it could be far more elegant, but I'm not into that right now. Make it work. 
        '
        ' So below we have to determine when to use the name of the seq file as-is, or when to change its drive letter. Yech.
        
        CRGPrimaryValues$ := Str$(tunCRGFramesPerFlip%) + "," + tunCRGSeqFile$ + "," + tun1ValuesStringified$;
        docase
        case tunType1$ = tunTypeContrast$ then
            CRGSecondaryArg$ := " -C ";
            CRGSecondaryValues$ := tun2ValuesStringified$;
        case tunType1$ = tunTypeOrientation$ then
            CRGSecondaryArg$ := " -O ";
            CRGSecondaryValues$ := tun2ValuesStringified$;
        case tunType1$ = tunTypeSpatial$ then
            CRGSecondaryArg$ := " -S ";
            CRGSecondaryValues$ := tun2ValuesStringified$;
        case tunType1$ = tunTypeTemporal$ then
            CRGSecondaryArg$ := " -T ";
            CRGSecondaryValues$ := tun2ValuesStringified$;
        case tunType1$ = tunTypeArea$ then
            CRGSecondaryArg$ := " -A ";
            CRGSecondaryValues$ := tun2ValuesStringified$;
        case tunType1$ = tunTypeXPos$ then
            CRGSecondaryArg$ := " -X ";
            CRGSecondaryValues$ := tun2ValuesStringified$;
            
        case tunType1$ = tunTypeCRG$ then
            CRGSecondaryArg$ := " -Y ";
            CRGSecondaryValues$ := Str$(tunCRGFramesPerFlip%) + "," + tunCRGSeqFile2$;
            ' DJS WARNING: i DON'T THINK THIS WORKS AS EXPECTED!?!
        'case tunType1$ = tunTypeBlank$ then  'Do nothing here, blank out values once we know which screen is which

        case tunType1$ = tunTypeGratingOnly$ then
            CRGSecondaryArg$ := " -C ";  'Yes, we do in fact treat it as contrast, the values should be 100 or 0 for on/off
            CRGSecondaryValues$ := tun2ValuesStringified$; 
        endcase;
         
        'Determine whether primary is master or slave screen, set master/slave values
        if tunCRGOnSlave% = 0 then 'primary on master
            TunCurveMArg$ := " -Y ";
            TunCurveSArg$ := CRGSecondaryArg$;
            MValues$ := CRGPrimaryValues$;
            SValues$ := CRGSecondaryValues$;
            if tunType1$ = tunTypeBlank$ then
                TunCurveSArg$ := "";
                SValues$ := "";
                SGrat$ := " -n ";
                SGratParam$ := "";
                'SlaveIndicator$ := "";
            else 
                if tunType1$ = tunTypeCRG$ then
                    ' oh-oh! CRG on slave, better change the drive letter in the filename. 
                    SValues$ := Str$(tunCRGFramesPerFlip%) + ",Z" + Mid$(tunCRGSeqFile2$, 2); 
                endif
            endif;
        else 'primary on slave
            TunCurveSArg$ := " -Y ";
            TunCurveMArg$ := CRGSecondaryArg$;
            SValues$ := Str$(tunCRGFramesPerFlip%) + ",Z" + Mid$(tunCRGSeqFile$, 2) + "," + tun1ValuesStringified$;
            MValues$ := CRGSecondaryValues$;
            if tunType1$ = tunTypeBlank$ then
                TunCurveMArg$ := "";
                MValues$ := "";
                MGrat$ := " -n ";
                MGratParam$ := "";
                'MasterIndicator$ := "";
            endif;
        endif;
        
    case tunType$ = tunTypeDots$ then
        'Dots is a fairly different beast, we'll need to do thing a bit differently than the others
        'build different background gray level string
        BGColor$ := " -b " +  "(" + Str$(tunDotsBGR%) + "/" + Str$(tunDotsBGG%) + "/" + Str$(tunDotsBGB%) + ") ";
        TunCurveMArg$ := " -D ";  'Dots on Master
        'holding on to trigger port for now, maybe needs to be cleared?
        MGrat$ := "";  'but clearing MGrat$
        MGratParam$ := "";  'and MGratParam$
        MasterIndicator$ := "";  'and MasterIndicator$
        'then buidling the grating spec
        MValues$ := "(" + Str$(tunDotsFGR%) + "/" + Str$(tunDotsFGG%) + "/" + Str$(tunDotsFGB%) + ")," 
                  + Str$(tunDotsX) + "," + Str$(tunDotsY) + "," + Str$(tunDotsDiameter) + "," 
                  + Str$(tunDotsSpeed) + "," + Str$(tunDotsDensity) + "," + Str$(tunDotsSize%) + ",";
        MValues$ := MValues$ + tunValuesStringified$;
        
    case tunType$ = tunTypeDanish$ then
        TunCurveMArg$ := " -H ";
        'Only set DGrat/DGratParam if we're using them
        DGrat$ := " -s ";
        DGratParam$ := GetGratingParameters$("Distractor1");  'the donut - this goes FIRST
        
    case tunType$ = tunTypeDSS$ then
        TunCurveMArg$ := " -H ";
        'Only set DGrat/DGratParam if we're using them
        DGrat$ := " -s ";
        DGratParam$ := GetGratingParameters$("Distractor1");  'the donut - this goes FIRST    
        
    case tunType$ = tunTypeNullTest$ then
        if tunNullTestStepFunc% = 0 then
            TunCurveMArg$ := " -P " + Str$(tunNullTestTF) + ",s,";
        else
            TunCurveMArg$ := " -P " + Str$(tunNullTestTF) + ",q,";
        endif;        
        
    else

        Message("Error - unknown value for tunType$: " + tunType$);
        Halt;

	endcase;
	
    

    'Build command line, any values that are unnecessary will be empty, so the build should work no matter what type of command line is required
    if tunDoRivalry% = 0 then
        cmdLine$ := Opener$ + ProgName$ + RemoteArg$ + FixationArg$ + XHairArg$ + BGColor$ + Dist2Screen$ + TriggerPort$ + Verbose$; 'prelim stuff
        cmdLine$ := cmdLine$ + RefrLock$ + OffsetFile$ + StimDur$;  'Dual VSG stuff
        cmdLine$ := cmdLine$ + MasterIndicator$ + DGrat$ + DGratParam$ + MGrat$ + MGratParam$ + TunCurveMArg$ + MValues$;  'Master grating stuff
        cmdLine$ := cmdLine$ + SlaveIndicator$ + SGrat$ + SGratParam$ + TunCurveSArg$ + SValues$;  'Slave grating stuff
        cmdLine$ := cmdLine$ + TunCurveS2Arg$ + S2Values$;  'Second slave parameters (for Box O' Donuts, more possible)
        
        ' Initial text marks
        ' djs Always version 3. NO difference if maintainmode is used or not. 
        SampleText("Tuning,3," + str$(Len(cmdLine$)));
        SampleText(tunCVSID$);
        for i% := 1 to Len(cmdLine$) step 100 do
            SampleText(Mid$(cmdLine$, i%, 100));
        next

    else
        fileM$ := GetDataPathRoot$() + "\\tunMaster.txt";
        fileS$ := GetDataPathRoot$() + "\\tunSlave.txt";         ' Will change this below, once file has been created, to the "slave" version
        tailM$ := FixationArg$ + XHairArg$ + BGColor$ + Dist2Screen$ + TriggerPort$ + " -V 128,FS " + Verbose$ + DGrat$ + DGratParam$ + MGrat$ + MGratParam$ + TunCurveMArg$ + MValues$ + MConstantLag$;
        tailS$ := FixationArg$ + XHairArg$ + BGColor$ + Dist2Screen$ + TriggerPort$ + " -V 128,FS " + Verbose$ + SGrat$ + SGratParam$ + TunCurveSArg$ + SValues$ + TunCurveS2Arg$ + S2Values$ + SConstantLag$;
        
        if createCmdTextFile%(fileM$, tailM$) <> 1 or createCmdTextFile%(fileS$, tailS$) <> 1 then
            Message("ERROR!|Cannot create tunMaster.txt or tunSlave.txt");
            halt;
        endif
        fileS$ := GetDataPathRootSlave$() + "\\tunSlave.txt";         ' Will change this below, once file has been created, to the "slave" version
        LogInfo("Master tuning parameters file: " + fileM$);
        LogInfo("Slave tuning parameters file: " + fileS$);
        
        cmdLineM$ := OpenerM$ + ProgName$ + RemoteArgM$ + " -F " + fileM$;
        cmdLineS$ := OpenerS$ + ProgName$ + RemoteArgS$ + " -F " + fileS$;
        
        'djs hack 4-22-2016
        ' The -l ### arg (l as in ell, not one) specifies a delay, in ms, prior to fixstim issuing the ready pulse. 
        ' I send it to the SLAVE so it waits until after sampling has started. This is not guaranteed to work - if the 
        ' MASTER dallies long enough before issuing the trigger to start sampling, then this delay on the SLAVE may not 
        ' be enough. A more robust, and complex, way to make it work would be to look for the MASTER ready pulse, and when
        ' received, THEN start the slave fixstim program. Sounds like a lot of hassle to me. 
        cmdLineS$ += " -l 500";
        
        'cmdLineM$ := OpenerM$ + ProgName$ + FixationArg$ + XHairArg$ + BGColor$ + Dist2Screen$ + TriggerPort$ + " -V 128 " + Verbose$;
        'cmdLineM$ := cmdLineM$ + DGrat$ + DGratParam$ + MGrat$ + MGratParam$ + TunCurveMArg$ + MValues$;
        'cmdLineS$ := OpenerS$ + ProgName$ + " -c 192.168.1.2:7000 " + FixationArg$ + XHairArg$ + BGColor$ + Dist2Screen$ + TriggerPort$ + " -n -V 128 " + Verbose$;
        'cmdLineS$ := cmdLineS$ + SGrat$ + SGratParam$ + TunCurveSArg$ + SValues$ + TunCurveS2Arg$ + S2Values$;
        
        PrintLog("Master: " + cmdLineM$ + "\n");
        PrintLog("tunMaster.txt: %s\n", tailM$);
        PrintLog("Slave: " + cmdLineS$ + "\n");
        PrintLog("tunSlave.txt: %s\n", tailS$);
        
        ' Initial text marks
        
        docase
        case tunType$ = tunTypeBoxODonuts$ then    
            if tunUseMaintainMode% >= 1 then  'if fixation point stays on, extraction is version 6
                SampleText("Tuning,6," + str$(Len(tailM$)) + "," + str$(Len(tailS$)));
            else 'value is 0, fixation point goes off, extraction is version 7
                SampleText("Tuning,7," + str$(Len(tailM$)) + "," + str$(Len(tailS$)));
            endif;
        case tunType$ = tunTypeCRG$ then
            SampleText("Tuning,8," + str$(Len(tailM$)) + "," + str$(Len(tailS$)));
        else
            ' djs Always version 3. NO difference if maintainmode is used or not. 
            SampleText("Tuning,3," + str$(Len(tailM$)) + "," + str$(Len(tailS$)));
        endcase;
        
        SampleText(tunCVSID$);
        
        for i% := 1 to Len(tailM$) step 100 do
            SampleText(Mid$(tailM$, i%, 100));
        next
        for i% := 1 to Len(tailS$) step 100 do
            SampleText(Mid$(tailS$, i%, 100));
        next
        
    endif
        
    ' Record initial text marks. The command line may need to be broken into pieces.
    ' For tuning: Version 6,7 are always box--o-donuts
    ' Version 8 is CRG.
    
'    docase
'    case tunType$ = tunTypeBoxODonuts$ then    
'        if tunUseMaintainMode% >= 1 then  'if fixation point stays on, extraction is version 6
'            SampleText("Tuning,6," + str$(Len(cmdLine$)));
'        else 'value is 0, fixation point goes off, extraction is version 7
'            SampleText("Tuning,7," + str$(Len(cmdLine$)));
'        endif;
'    case tunType$ = tunTypeCRG$ then
'        SampleText("Tuning,8," + str$(Len(cmdLine$)));
'    else
'        ' djs Always version 3. NO difference if maintainmode is used or not. 
'        SampleText("Tuning,3," + str$(Len(cmdLine$)));
'    endcase;
'    
'    SampleText(tunCVSID$);
'    for i% := 1 to Len(cmdLine$) step 100 do
'        SampleText(Mid$(cmdLine$, i%, 100));
'    next
    
    
	'Begin the stimulus program. It will take a few seconds for the VSG to initialize.
	PrintLog(cmdLine$+"\n");
    printlog("num advances is %d and num repeats is %d\n",tunNAdvances%,tunNRepeats%);
    
    if tunDoRivalry% = 0 then
        StimHandle% := ProgRun(cmdLine$, 1);
        if StimHandle% <0 then Message("Could not start stimulus."); halt; endif
    else
        StimHandle% := ProgRun(cmdLineM$, 1);       
        StimHandleSlave% := ProgRun(cmdLineS$, 1);
    endif
    
	
	ToolbarSet(0,"",IdleProcessing%);	'Enable the IdleProcessing function
	ToolbarEnable(2,1);
	ToolbarEnable(1,0);
	ToolbarEnable(6,0);
	ToolbarEnable(7,0);
	View(DataWindow%);
	Yield(5);
return 1;
end;


func createCmdTextFile%(filename$, cmd$)
    if FileOpen(filename$, 8, 1) > 0 then
        Print(cmd$);
        FileClose();
        return 1;
    else
        return -1;
    endif
    return -1;
end


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' DrawStim
' 
' Draws stimulus in xy window (iDraw%==1) or blanks it (0). 
proc DrawStim(iDraw%)

	if iDraw% > 0 then
		var xstim, ystim;
		xstim := FixationX;
		ystim := FixationY;

		' Draw stimulus in xy window
		View(XYWindow%).XYAddData(iStimChannel%, xstim, ystim);
	else 
		' erase the stim and the window from xy view
		View(XYWindow%).XYDelete(iStimChannel%);
	endif

end;

'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Get a log progression from xmin to xmax, through nsteps%. Assumed that vec[] has enough room!
Proc GetLogProgression(xmin, xmax, nsteps%, vec[])
	var stepsize;
	var v;
	var i%:= 0;
	stepsize := (Ln(xmax) - Ln(xmin))/nsteps%;
	for v := Ln(xmin) to Ln(xmax)+stepsize/2 step stepsize do
		PrintLog("Value[" + str$(i%) + "]=" + str$(Exp(v)) + "\n");
		vec[i%] := Exp(v);
		i% := i% + 1;
	next;
end;


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Get a linear progression from xmin to xmax, through nsteps%. Assumed that vec[] has enough room!
Proc GetLinearProgression(xmin, xmax, nsteps%, vec[])
	var stepsize;
	var v;
	var i%:= 0;
	stepsize := (xmax -xmin)/nsteps%;
	for v := xmin to xmax+stepsize/2 step stepsize do
	'	PrintLog("Value=" + str$(v) + "\n");
		vec[i%] := v;
		i% := i% + 1;
	next;
end;


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Put a vector of numbers into a comma separated string
Func StringifyProgression$(n%, vec[], ind%[])
	var s$;
	var i%;
    
    if n% > tunMaxTrials% then
        message("You have requested " + Str$(n%) + " trials, max is " + Str$(tunMaxTrials%) + "!  Quitting!");
        halt
    endif;
    
    
	for i% := 0 to n%-1 do
		if i% > 0 then 
			s$ += ",";
		endif
		s$ += str$(vec[ind%[i%]]);
	next
	return s$;
end;




'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Put a vector of numbers into a comma separated string
' Here we will use a "reference" vector to determine whether to pass a value or not
' This is designed for the 2-screen CRG experiments.  The progression for the secondary screen will be
' a series of zeros and 100s.  If 0, we want the secondary screen to be blank, so we insert -1.  If non-zero,
' we want the secondary screen to have the same SEQfile index as the main screen, so we refer back to the
' main screen value.
Func StringifyProgressionCRG2$(n%, refvec[], refind%[], vec[], ind%[])
	var s$;
	var i%;
	for i% := 0 to n%-1 do
		if i% > 0 then 
			s$ += ",";
		endif
        if refvec[refind%[i%]] = 0 then
            s$ += str$(-1);
        else
            s$ += str$(vec[ind%[i%]]);
        endif;
	next
	return s$;
end;



func SelectWavemarkDialog%()
	var iReturn%:=1;
	var i%;
    var whichWaveMark% := 1;
	DlgCreate("Select Wavemark");
	DlgInteger(1, "Input Wavemark to view, -1 for all", -1, 256);  'max is based on highest possible wavemark value
    
	i% := DlgShow(whichWaveMark%);

	if i% = 1 then
		PrintLog("SelectWavemarkDialog - user hit OK\n");
        for i% := 0 to tunNWavemarks%-1 do  'for each wavemark channel
            View(DataWindow%).MarkMask(i%+1,0,0,-1);  'exclude all codes on layer 0
            View(DataWindow%).MarkMask(i%+1,0,1,whichWaveMark%);  'then include requested code (or all, if -1) on layer 0
        next;       
	endif;
	if i% = 0 then
		PrintLog("SelectWavemarkDialog - user hit Cancel\n");
	endif;
    'PrintLog("Return value is %d\n", iReturn%);  'always return 1, so don't bother reporting this
	return iReturn%;
end;


proc ClearMasterOrSlaveIfNecessary(&SGrat$,&SGratParam$,&SlaveIndicator$,&TunCurveSArg$,&SValues$,&MGrat$,&MGratParam$,&MasterIndicator$,&TunCurveMArg$,&MValues$)
    'Clear master/slave if there is only one tuning curve to do. 
    'Note that SlaveIndicator$ and MasterIndicator$ are no longer changed, but still in the subject line so I don't have to change everything else
    'djs - Changing to use fixstim for everything. Null stim set uses -N arg - this will use any fixpt and xhair arg, but no grating.
    if tunDualTuningType% = 1 then        
        SGrat$ := "";  'clear slave grating
        SGratParam$ := "";  'clear slave grating params
        TunCurveSArg$ := " -N ";  'tuning curve argument for no tuning curve
        SValues$ := "";  'clear the tuning curve values
    endif
    if tunDualTuningType% = 2 then        
        MGrat$ := "";  'clear master grating
        MGratParam$ := "";  'clear master grating params
        TunCurveMArg$ := " -N ";  'clear the tuning curve argument
        MValues$ := "";  'clear the tuning curve values
    endif;
end;



func CheckSeqFile%(fileIn$,&nFlips%);
    var fh0%;
    var numRead%;
    var readLine$[2];
    var keepGoing% := 1;
    var nFlipsFirst%;
    var nFlipsSubsequent%;
    var loopedOnce%;
    var lineLength%;
    var expectStr%[50];
    var i%;
    var nCh%;  'number of characters
    var lineCount%;
    
    fh0%:=FileOpen(fileIn$,8,0);
    nFlips% := 0;
    lineCount% := 0;
    
    ' Make sure file was opened. If it wasn't leave lineCount% == 0. We return lineCount%-1 later, so 
    ' this will lead to a negative return code. 
    if fh0% < 0 then
        message("ERROR! Cannot open sequence file " + fileIn$);
    else
        
        ' OK file open. Lets read. 
        readsetup(""," ","","","	");
        
        while keepGoing% do
            'Read the next line in the file, return line and number of fields read
            numRead% := read(readLine$[0:2]);
            'And update the number of lines read
            lineCount% += 1;
            
            'Here we expect exactly one field per line, if there is more than one, this is an error, quit
            if numRead% > 1 then
                message("ERROR!!!|Expected exactly one field on line " + Str$(lineCount%) + ",\ngot " + Str$(numRead%) + " fields!");
                fileclose();  'close fh0%, the currently open file             
                halt;
            endif;
            
            'Get the number of flips in the line
            docase
            case loopedOnce% = 0 then
                nFlipsFirst% := Len(readLine$[0]);
                loopedOnce% := 1;  'don't do this again
            case numRead% >= 0 then 'Make sure all lines are the same length
                nFlipsSubsequent% := Len(readLine$[0]);
                if nFlipsFirst% <> nFlipsSubsequent% then
                    message("ERROR!!!|On line " + Str$(lineCount%) + " expected " + Str$(nFlipsFirst%) + " flips,\ngot " + Str$(nFlipsSubsequent%) + "!");
                    fileclose();  'close fh0%, the currently open file
                    halt;
                endif;
            case numRead%<0 then
                keepGoing% := 0;
            endcase;    
            
            'Make sure there are nothing but zeros or ones
            for i% := 0 to len(readLine$[0])-1 do
                if mid$(readLine$[0],i%+1,1) <> "1" and mid$(readLine$[0],i%+1,1)  <> "0" then
                    message("ERROR!!!|On line " + Str$(lineCount%) + " found unexpected character " + mid$(readLine$[0],i%+1,1) + "!");
                    fileclose();  'close fh0%, the currently open file
                    halt;
                endif;
            next;
            
        wend;    
        
        fileclose();  'close fh0%, the currently open file
        
        printlog("Successfully read file %s, contained %d lines with %d flips per line!\n",fileIn$,lineCount%-1,nFlipsFirst%);
        
        nFlips% := nFlipsFirst%;  'set nFlips%, which sets the flips variable sent in the call    
        
    endif
    return lineCount%-1;
    
end



func WhichButton%(&startT,endT,&bStatus%,&buttonT)
	'Determine which button is pressed, if any
    'Read the button channel, of course
    'Note - another very ad-hoc function, which assumes lots of variables we know exist
    'Man, this function does a lot of stuff, hopefully it will all be useful 
    
    
    'Clear the button press arrays
    button1Press := -1;
    button2Press := -1;
    button1Release := -1;
    button2Release := -1;

    'Each check will return -1 if there are no events of that type, time of event if there is one
    'Check for button 1 (left) press
    button1Press := View(DataWindow%).ChanSearch(ButtonChannel%,8,startT+tic,endT,button1Thresh,buttonHysteresis,buttonMinTime);
    
    'Check for button 1 (left) release
    button1Release := View(DataWindow%).ChanSearch(ButtonChannel%,7,startT+tic,endT,button1Thresh,buttonHysteresis,buttonMinTime); 
    
    'Check for button 2 (right) press
    button2Press := View(DataWindow%).ChanSearch(ButtonChannel%,7,startT+tic,endT,button2Thresh,buttonHysteresis,buttonMinTime);
    
    'Check for button 2 (right) release
    button2Release := View(DataWindow%).ChanSearch(ButtonChannel%,8,startT+tic,endT,button2Thresh,buttonHysteresis,buttonMinTime);
    
        
    'OK, I'm trying to take out the startT := endT lines when nothing happens - it's possible things are being missed
    'due to buttonMinTime and then skipped because the tiem moves forward.
    
    'Now do a whole bunch of checking to make sure there aren't any errors, update startT and bStatus% if necessary,
    'and hopefully return success
    'This is all nice and complicated, but thorough check and a response matrix of all possible press combos suggests
    'that every contingency is dealt with.  Even under most error conditions it returns a value.  I need to consider
    'what happens in the case that something goes wrong...a flush might not work depending on return values/states and
    'what is expected.
    docase
    case button1Press = -1 and button2Press = -1 and button1Release = -1 and button2Release = -1 then 'nothing happened on this check
        'startT := endT;
        buttonT := -1;
        return 1;
    case bStatus% = 0 then  'initial status is no button pressed
        'check for either button press
        docase
        case button1Press <= -1 and button2Press <= -1 then  'no button pressed
            'startT := endT;  'no change
            buttonT := -1;
            docase
            case button1Release > -1 then
                printlog("Error!  Button 1 release occurred without a recorded press!\n");
                startT := button1Release;  'fast-forward to time of "false" release
                buttonT := startT;
                return -1;
            case button2Release > -1 then
                printlog("Error!  Button 2 release occurred without a recorded press!\n");
                startT := button2Release;  'fast-forward to time of "false" release
                buttonT := startT;
                return -1;  
            else
                return 1;  'success, no change
            endcase
        case button1Press > -1 and button2Press > -1 then  'both buttons pressed!
            if button1Press < button2Press then
                bStatus% := 1;  'consider it a button 1 press
                startT := button1Press;
                buttonT := startT;
                printlog("Recorded button 1 press at " + Str$(startT) + "\n");
                SampleText("Button 1 pressed",startT);
                docase 
                case button1Release > -1 and button1Release < button1Press then
                    printlog("Error!  Button 1 release occurred before Button 1 press when initial status was no button pressed!\n");
                    return -1;
                case button2Release > -1 and button2Release < button1Press then
                    printlog("Error!  Button 2 release occurred before Button 1 press when initial status was no button pressed!\n");
                    return -1;  
                else
                    return 1
                endcase;
            else  'button2Press > button1Press
                bStatus% := 2;  'consider it a button 2 press
                startT := button2Press;
                buttonT := startT;
                printlog("Recorded button 2 press at " + Str$(startT) + "\n");
                SampleText("Button 2 pressed",startT);
                docase 
                case button1Release > -1 and button1Release < button2Press then
                    printlog("Error!  Button 1 release occurred before Button 2 press when initial status was no button pressed!\n");
                    return -1;
                case button2Release > -1 and button2Release < button2Press then
                    printlog("Error!  Button 2 release occurred before Button 2 press when initial status was no button pressed!\n");
                    return -1;  
                else
                    return 1
                endcase;
            endif;
        case button1Press > -1 then  'no button 2 press, would trigger prior case
            bStatus% := 1;  'it's a button 1 press
            startT := button1Press;
            buttonT := startT;
            printlog("Recorded button 1 press at " + Str$(startT) + "\n");
            SampleText("Button 1 pressed",startT);
            docase 
            case button1Release > -1 and button1Release < button1Press then
                printlog("Error!  Button 1 release occurred before Button 1 press when initial status was no button pressed!\n");
                return -1;
            case button2Release > -1 and button2Release < button1Press then
                printlog("Error!  Button 2 release occurred before Button 1 press when initial status was no button pressed!\n");
                return -1;  
            else
                return 1
            endcase;
        case button2Press > -1 then  'no button 1 press, would trigger prior case
            bStatus% := 2;  'it's a button 2 press
            startT := button2Press;
            buttonT := startT;
            printlog("Recorded button 2 press at " + Str$(startT) + "\n");
            SampleText("Button 2 pressed",startT);
            docase 
            case button1Release > -1 and button1Release < button2Press then
                printlog("Error!  Button 1 release occurred before Button 2 press when initial status was no button pressed!\n");
                return -1;
            case button2Release > -1 and button2Release < button2Press then
                printlog("Error!  Button 2 release occurred before Button 2 press when initial status was no button pressed!\n");
                return -1;  
            else
                return 1
            endcase;
        else
            printlog("Error - shouldn't ever get in here!\n"); 'logically all states should be accounted for, but just in case
            startT := max(button1Press,button2Press,button1Release,button2Release);  'just clear it all out
            buttonT := startT;
            docase  'And set the button status based on the last recorded event
            case startT = button1Release or startT = button2Release then
                bStatus% := 0;
            case startT = button1Press then
                bStatus% := 1;
            case startT = button2Press then
                bStatus% := 2;
            endcase;
            return -1;
        endcase;
            
    case bStatus% = 1 then  'initial status is LEFT button pressed
        'check for left button release
        docase
        case button1Release > -1 then
            bStatus% := 0;  'Button is released
            startT := button1Release;
            buttonT := startT;
            printlog("Recorded button 1 release at " + Str$(startT) + "\n");
            SampleText("Button 1 released",startT);
        case button1Press > -1 or button2Press > -1 or button2Release > -1 then
            printlog("Error!  Recorded something other than button 1 release when button 1 believed to be pressed!\n");
            startT := max(button1Press,button2Press,button2Release);
            buttonT := startT;
            docase
            case startT = button1Press then
                bStatus% := 1;
            case startT = button2Press then
                bStatus% := 2;
            case startT = button2Release then
                bStatus% := 0;
            endcase;
            return -1;
        else
            'startT := endT;  'no change 
            buttonT := -1;            
        endcase;
        
        'check for crazy errors
        docase
        case button1Press > -1 and button1Press < button1Release then
            printlog("Error!  Button 1 press occurred before release when initial status was Button 1 down!\n");
            return -1;
        case button2Press > -1 and button2Press < button1Release then
            printlog("Error!  Button 2 press occurred before Button 1 release when initial status was Button 1 down!\n");
            return -1;
        case button2Release > -1 and button2Release < button1Release then   
            printlog("Error!  Button 2 release occurred before Button 1 release when initial status was Button 1 down!\n");
            return -1;
        case button1Release = -1 and (button1Press > -1 or button2Press > -1 or button2Release > -1) then
            printlog("Error!  Button 1 release expected, another event detected!\n");
            return -1;
        else
            return 1;  'success
        endcase;
    
    case bStatus% = 2 then  'initial status is RIGHT button pressed
        'check for right button release
        docase
        case button2Release > -1 then
            bStatus% := 0;  'Button is released
            startT := button2Release;
            buttonT := startT;
            printlog("Recorded button 2 release at " + Str$(startT) + "\n");
            SampleText("Button 2 released",startT);
        case button1Press > -1 or button2Press > -1 or button1Release > -1 then
            printlog("Error!  Recorded something other than button 2 release when button 2 believed to be pressed!\n");
            startT := max(button1Press,button2Press,button1Release);
            buttonT := startT;
            docase
            case startT = button1Press then
                bStatus% := 1;
            case startT = button2Press then
                bStatus% := 2;
            case startT = button1Release then
                bStatus% := 0;
            endcase;
            return -1;
        else
            'startT := endT;  'no change
            buttonT := -1;            
        endcase;
        
        'check for crazy errors
        docase
        case button2Press > -1 and button2Press < button2Release then
            printlog("Error!  Button 2 press occurred before release when initial status was Button 2 down!\n");
            return -1;
        case button1Press > -1 and button1Press < button2Release then
            printlog("Error!  Button 1 press occurred before Button 2 release when initial status was Button 2 down!\n");
            return -1;
        case button1Release > -1 and button1Release < button2Release then   
            printlog("Error!  Button 1 release occurred before Button 2 release when initial status was Button 2 down!\n");
            return -1;
        case button2Release = -1 and (button1Press > -1 or button2Press > -1 or button1Release > -1) then
            printlog("Error!  Button 2 release expected, another event detected!\n");
            return -1;
        else
            return 1;  'success
        endcase;
        
    endcase;
    

end;
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

proc FlushButton(&startT,endT,&bStatus%,&buttonT)
    'Used to flush out the status of the button until all button events are in the past relative to endT (typically tNow)
    'Useful in the case of a button error, to just clear out and start over
    while buttonT > -1 do
        WhichButton%(startT,endT,bStatus%,buttonT);
    wend;
    printlog("Button Flush complete at " + Str$(endT) + "\n");
    'When this is done we will have no idea when the last event occured or necessarily what it was, but bStatus% 
    'ought to be correct for time endT and we will be ready to try reading the button again.
end


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc DoSampleAutoName(key$,long$,short$,master$,slave$)
    'This function will do the auto-naming of files.  It will take into account the setup of the system
    '(if there are one or two 1401s, and whether this is a micro/power or master/slave relationship)
    'The long$ name should be 8 characters or fewer
    'The short$ name should be 3 character or fewer
    
    if UseTwo1401s% = 0 then
        SampleAutoName$(dataCellName$ + "_" + long$ + "_000");  'NOTE: maximum of 13 characters!!!
    else
        EqualizeSMRFilenumbers(dataPathRoot$ + "\\" + dataDataSet$,dataCellName$+"_" + short$ + master$ + "_",dataCellName$+"_" + short$ + slave$ + "_");
        SampleAutoName$(dataCellName$ + "_" + short$ + master$ + "_000");  'NOTE: maximum of 13 characters!!!
        SetStringRegistryValue(key$, "pref", short$);
    endif;    
end


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' The vdac32% function converts a value in user DAC units into an integer value
'  (the result of the function) suitable for passing into a sequencer variable
'  for use in the DAC, ADDAC, RAMP and OFFSET sequencer instructions. It mimics
'  the vdac32() expression in the text sequence compiler.
'
' out     is the output value that you want to generate, in user DAC units.
' scale   is the user DAC units corresponding to one volt on the actual DAC
'         (or two volts for a ten-volt system). This is exactly the same as
'         the DACscale field used with the SET or SDAC directives.
' offset  is the user DAC units corresponding to zero volts output. This is
'         exactly the same as the DACOffset field in SET or SDAC.
'
' If you want to use this function to calculate the slope for a ramp, use
'  vdac32%(volts/sticks%(time)) for maximum accuracy.
'
func vdac32%(out, scale, offset)
var v32;                                ' Real variable for the calculation
out := out - offset;                    ' First compensate for offset
v32 := ((out * (6553.6 / scale)) * 65536.0);   ' Floating point result
var v32%;                               ' Integer value for the result
if v32 > 2147483647.0 then              ' 2147483647 is the largest positive
    v32% := 2147483647;                 '  integer value
else
    if v32 < -2147483647.0 then         ' -2147483648 is the lowest negative value
        v32% := -2147483647;            '  but we have to stay one above that
    else
        v32% := round(v32);             ' We can be sure this will not overflow
    endif;
endif;
return v32%;
end
