' Collects 60 seconds of data from a single channel and displays the data and
' an FFT. Data sampling starts immediately when script started. After data taking 
' complete, opens 'File Save' dialog. 
'
' Hard-coded to use input port 7 - this is set in the sampling configuration file, 
' eeg.s2c. 

#include "../util/UsreyUtil.s2s"

var hData%;
var hPower%;
var iSeconds% := 60;
var iStatus%;
var EEGChannel%:=1;
var UtilityChannel%:=2;

CreateSampleConfiguration();
InitializeWindows();

SampleStart(0);

repeat
	iStatus% := SampleStatus();
	Yield(1);
until iStatus%<0;

View(hData%);


proc CreateSampleConfiguration()
    
    'set the port (not channel #) where EEG will be acquired
    'const EEGPORT% := 7;
    
    var i%;
    
	SampleClear(); 'Set standard sampling state
	SampleAutoComment(0); 'Prompt for comment after sampling
	SampleAutoCommit(60); 'Seconds between each file commit
    SampleLimitTime(iSeconds%);
    
    FilePathSet(GetDataPathRoot$() + "\\" + GetDataSetName$(), 3);
    FilePathSet(GetDataPathRoot$() + "\\" + GetDataSetName$(), 1);
    SampleAutoName$("EEG_000");
	SampleAutoFile(1);
    
    'SampleWaveform(1, EEGPORT%, 1000);
    'SampleTitle$(1, "EEG Port2");
    var tempLabel$;
    if EEGPort% > -1 then
        SampleWaveform(EEGChannel%,EEGPort%,1000);  
        tempLabel$ := CustomLabels$[EEGPort%];
        if tempLabel$ = "" then
            tempLabel$ := "EEG";
        endif;
        SampleTitle$(EEGChannel%, tempLabel$);
    else
        message("No EEG channel was requested in the Config->DAQ dialog!  Quitting!");
        halt
    endif;
    
    if UtilityPort% > -1 then
        SampleWaveform(UtilityChannel%,UtilityPort%,30000); 
        tempLabel$ := CustomLabels$[UtilityPort%];
        if tempLabel$ = "" then
            tempLabel$ := "Utility Port";
        endif;        
        SampleTitle$(UtilityChannel%, tempLabel$);
    endif;


    
    SampleOptimise(2, 2, 2, 2, 50);  'Set optimise mode (do this last)
    SampleMode(1); 'Continuous sampling
end;


proc InitializeWindows()
    hData% := FileNew(0, 5);
    XRange(0, iSeconds%);
    YRange(1, -2, 2);
    Window(0, 50, 100, 100);
    hPower% := SetPower(1, 2048);
    View(hPower%).WindowVisible(1);
    View(hPower%).Window(0, 0, 100, 50);
    View(hPower%).XRange(0, 100);
    ProcessAuto(1.0, 0, 1);
    return;
end
