#include "ExtractionUtilities.s2s"
#include "../util/MiscUtilities.s2s"

' Initialization and state saving vars
var attxIsInitialized% := 0;
var attxOutputHandle := -1;
var attxTLast := -1;            ' last time processed
var attxTStop := -1;            ' Time to process to

' saved state vars
var attxITrial% := 0;
var attxIsCorrectionTrial% := 0;
var attxICueType% := 0;
const cuetypeTowards% := 1;
const cuetypeAway% := 2;
var attxIChangeType% := 0;
const changetypeUpper% := 4;
const changetypeLower% := 8;
var attxIUpDown% := 0;
const updownUp% := 16;
const updownDown% := 32;
var attxIResponse% := 0;
const responseNone% := 0;
const responseCorrect% := 1;
const responseIncorrect% := -1;
const responseFalseAlarmUp% := 2;
const responseFalseAlarmDn% := -2;
var attxWCueTime := -1;
var attxFCueTime := -1;
var attxFStimTime := -1;
var attxFChangeTime := -1;
var attxFRxTime := -1;
var attxFXTime := -1;               ' time of trigger following X
var attxBreakFixTime := -1;         ' time eye first breaks fix pt window
var attxAnsPtTime := -1;            ' time eye first enters an answer window

' big data chunk for eye data
var attxEyeX[10000];
var attxEyeY[10000];
var attxNEyeX%;
var attxNEyeY%;
var attxEyeXStartTime;
var attxEyeXBinSize;
var attxEyeYStartTime;
var attxEyeYBinSize;

' File-specific vars with parameters that may change from data file to data file.
var attxVersionNumber% := 0;
var attxNumberOfElectrodes% := 0;
var attxXChannel% := 0;
var attxYChannel% := 0;
var attxFrameTriggerChannel% := 0;
var attxFixationPointChannel% := 0;
var attxStimChannel% := 0;
var attxStimChangeChannel% := 0;
var attxReadyChannel% := 0;
var attxEEGChannel% := 0;
var attxWaveMarkChannel% := 0;
var attxNewEEGChannel% := 0;
var attxFixationX := 0;
var attxFixationY := 0;
var attxWindowRadius := 0;
var attxAnswerPointOffset := 0;
var attxAnswerPointWindowRadius := 0;
var attxDegreesPerVoltX := 0;
var attxDegreesPerVoltY := 0;

' state related vars and consts
const attxstateStart% := 1;
const attxstateWhtPt% := 9;
const attxstateFixPt% := 2;
const attxstateStim% := 3;
const attxstateChange% := 4;
const attxstateAbort% := 5;
const attxstateError% := 6;
const attxstateDone% := 7;
const attxstateAnswer% := 8;
var attxIState% := attxstateStart%;

' Counters
var attxNTrials := 0;
var attxNTrialsCompleted := 0;
var attxNTrialsCorrect := 0;
var attxNTrialsTowards := 0;
var attxNTrialsAway := 0;
var attxNTrialsTowardsCorrect := 0;
var attxNTrialsAwayCorrect := 0;
var attxNTrialsCatch := 0;
var attxNTrialsCatchCorrect := 0;
var attxNCorrectionTrials := 0;
var attxNCorrectionTrialsCompleted := 0;
var attxNCorrectionTrialsCorrect := 0;

const MaxTrials% := 1000;
var attxRxTimeTowards[MaxTrials%];
var attxRxTimeAway[MaxTrials%];
var attxRxTimeCatch[MaxTrials%];


' Initialization function. Should be called once with a handle to an output file, already opened. 
' Running totals will be printed on log output. 

func AttentionExtractInit%(hOutput, initStr$)
    if InitFileVars%(initStr$) < 0 then
        return -1;
    endif    
    attxIsInitialized% := 1;
    attxOutputHandle := hOutput;
    InitTrialVars();
    return;
end

    
' AttentionExtract%(tStart, tStop)
' 
' Extract attention data betwen tStart and tStop. If tStart<0, start at beginning of file. 
' If tStop<0, extract to the end of the file. 
'
' When called the current view must be the data file/time view to be analyzed. 

func AttentionExtract%(tStart, tStop)
    var status% := 0;
    var tFound := -1;
    var sFound$;
    var sIgnore$ := "0Jqs";
    var tTrigger;
    
    attxTLast := tStart;
    attxTStop := tStop;

    tFound := NextKeyOrText(attxTLast, sFound$, sIgnore$);
    while tFound >= 0 and (attxTStop < 0 or (attxTStop > 0 and tFound <= attxTStop)) and attxIState% <> attxstateError% do

        docase
        case attxIState% = attxstateStart% then
            docase
            case sFound$ = "*" then
                attxIsCorrectionTrial% := 1;
            case sFound$ = "W" then
                attxITrial% += 1;
                attxWCueTime := GetTriggerTimeFor(sFound$, tFound);
                attxIState% := attxstateWhtPt%;
            else
                ' Error
                PrintLog("error expect W/* got %s\n", sFound$);
                attxIState% := attxstateError%;
            endcase
            
        case attxIState% = attxstateWhtPt% then
            docase
            case sFound$ = "F" then
                attxICueType% := cuetypeTowards%;
                attxIState% := attxstateFixPt%;
                attxFCueTime := GetTriggerTimeFor(sFound$, tFound);
            case sFound$ = "G" then
                attxICueType% := cuetypeAway%;
                attxIState% := attxstateFixPt%;
                attxFCueTime := GetTriggerTimeFor(sFound$, tFound);
            case sFound$ = "X" then
                attxIState% := attxstateAbort%;
            else
                ' Error
                PrintLog("error expect FG got %s\n", sFound$);
                attxIState% := attxstateError%;
            endcase
        case attxIState% = attxstateFixPt% then
            docase
            case sFound$ = "S" then
                attxFStimTime := GetTriggerTimeFor(sFound$, tFound);
                attxIState% := attxstateStim%;
            case sFound$ = "X" then
                attxIState% := attxstateAbort%;
            else
                'TODO ERROR
                attxIState% := attxstateError%;
            endcase
        case attxIState% = attxstateStim% then
            docase
            case sFound$ = "C" then
                attxIChangeType% := changetypeUpper%;
                attxIUpDown% := updownUp%;
                attxIState% := attxstateChange%;
                attxFChangeTime := GetTriggerTimeFor(sFound$, tFound);
            case sFound$ = "D" then
                attxIChangeType% := changetypeLower%;
                attxIUpDown% := updownUp%;
                attxIState% := attxstateChange%;
                attxFChangeTime := GetTriggerTimeFor(sFound$, tFound);
            case sFound$ = "c" then
                attxIChangeType% := changetypeUpper%;
                attxIUpDown% := updownDown%;
                attxIState% := attxstateChange%;
                attxFChangeTime := GetTriggerTimeFor(sFound$, tFound);
            case sFound$ = "d" then
                attxIChangeType% := changetypeLower%;
                attxIUpDown% := updownDown%;
                attxIState% := attxstateChange%;
                attxFChangeTime := GetTriggerTimeFor(sFound$, tFound);
            case sFound$ = "X" then
                attxIState% := attxstateAbort%;
            else
                'TODO ERROR
                attxIState% := attxstateError%;
            endcase
        case attxIState% = attxstateChange% then
            docase
            case sFound$ = "+" then
                attxIResponse% := responseCorrect%;
                attxIState% := attxstateAnswer%;
                attxFRxTime := tFound - attxFChangeTime;
            case sFound$ = "-" then
                attxIResponse% := responseIncorrect%;
                attxIState% := attxstateAnswer%;
                attxFRxTime := tFound - attxFChangeTime;
            case sFound$ = "X" then
                attxIState% := attxstateAbort%;
            else
                'TODO ERROR
                attxIState% := attxstateError%;
            endcase
        case attxIState% = attxstateAnswer% then
            docase
            case sFound$ = "X" then
                attxIState% := attxstateAbort%;
            else
                'TODO ERROR
                attxIState% := attxstateError%;
            endcase
        else
            'TODO this shouldn't happen!
            attxIState% := attxstateError%;
        endcase


        ' If we are in attxstateAbort%, then fetch the corresponding trigger.... lets use
        ' the trigger on the fixation channel.
        
        if attxIState% = attxstateAbort% then
            attxFXTime := GetTriggerTimeFor(sFound$, tFound);
            if attxFStimTime > 0 then
                var eAnswer%;
                GetEyeSignalIntervals(attxFStimTime, attxFXTime, attxEyeXStartTime, attxEyeX[], attxNEyeX%, attxEyeXBinSize, attxEyeYStartTime, attxEyeY[], attxNEyeY%, attxEyeYBinSize);
                ArrMul(attxEyeX[], attxDegreesPerVoltX);
                ArrMul(attxEyeY[], attxDegreesPerVoltY);
                eAnswer% := GetEyePositionMilestones%(attxEyeX[], attxNEyeX%, attxEyeY[], attxNEyeY%, 
                    attxEyeXStartTime, attxEyeXBinSize, attxBreakFixTime, 
                    attxAnsPtTime, attxFixationX, attxFixationY, attxWindowRadius, 
                    attxAnswerPointOffset, attxAnswerPointWindowRadius);
                
                ' See if we ought to correct the reaction time. That's only in the case where there was an answer - in which case
                ' attxIResponse% is not 0.....
                if attxIResponse% <> 0 then
                    if attxAnsPtTime > 0 then
                        attxFRxTime := attxAnsPtTime - attxFChangeTime;
                    else
                        PrintLog("ERROR: No answer time found from eye data, but answer was found online!!!\n");
                    endif
                endif

                ' Look for cheated-but-got-away-with-it. That'd be where fixation was broken before the contrast change
                ' but we didn't detect it. This is NOT a false alarm trial - because a contrast change happened. Its also
                ' not a valid trial - because fixation was broken prior to the contrast change. Here we force the response
                ' to be zero to make sure the trial is ignored in downstream analysis. 
                
                if attxIChangeType% <> 0 and attxIUpDown% <> 0 and attxBreakFixTime < attxFChangeTime then
                    attxIResponse% := responseNone%;
                endif

                ' Look for false alarms. That'd be when there is no change type/updown specified (i.e. the contrast change
                ' signal never went out), but the eye entered an answer window before the X trigger was received.
                if attxIChangeType% = 0 and attxIUpDown% = 0 and attxAnsPtTime > 0 then
                    ' false alarm
                    attxIResponse% := eAnswer% * 2;
                    attxFRxTime := attxAnsPtTime - attxFStimTime;
                endif
                
            endif
        endif
        

        ' If we are state attxstateAbort% or attxstateError% then we flush the state
        ' and transition to attxstateStart%.
        
        if attxIState% = attxstateAbort% or attxIState% = attxstateError% then
            FlushState();
            attxIState% := attxstateStart%;
        endif
        
        attxTLast := tFound;
        tFound := NextKeyOrText(attxTLast, sFound$, sIgnore$);
    wend

    PrintResults();
    
    return status%;
end


' PctString()
'
' Get M/N as a percentage, returned as a string in %4.1%% format, e.g 12.4%
' If N is zero, then return -----. 

func PctStr$(N, M)
    var s$ := "@@.@%";
    if N>0 then
        s$ := Print$("%4.1f%%", 100.0*M/N);
    endif
    return s$;
end


' PrintResults()
'
' Print tallies of trials, success, failure, catch trials, reaction times, etc to the log window. 
' This is intended as a summary and is not as complete as the full results printed by FlushState()
' at the end of each trial. 

proc PrintResults()
    var mean, std;
    PrintLog("\n==============================================================================\n\n");
    PrintLog("# Trials       : %5d\n", attxNTrials);
    PrintLog("# Completed (%): %5d (%s)     Cue         #  %%correct   rxtime\n", attxNTrialsCompleted, PctStr$(attxNTrials, attxNTrialsCompleted));
    mean := 0;
    std := 0;
    if attxNTrialsTowards > 0 then
        ArrSum(attxRxTimeTowards[0:attxNTrialsTowards], mean, std);
    endif
    PrintLog("                                   Towards   %3d     %s    %.3f +- %.3f s\n", attxNTrialsTowards, PctStr$(attxNTrialsTowards, attxNTrialsTowardsCorrect), mean, std);

    mean := 0;
    std := 0;
    if attxNTrialsAway > 0 then
        ArrSum(attxRxTimeAway[0:attxNTrialsAway], mean, std);
    endif
    PrintLog("                                   Away      %3d     %s    %.3f +- %.3f s\n", attxNTrialsAway, PctStr$(attxNTrialsAway, attxNTrialsAwayCorrect), mean , std);

    mean := 0;
    std := 0;
    if attxNTrialsCatch > 0 then
        ArrSum(attxRxTimeCatch[0:attxNTrialsCatch], mean, std);
    endif
    PrintLog("                                   Catch     %3d     %s    %.3f +- %.3f s\n", attxNTrialsCatch, PctStr$(attxNTrialsCatch, attxNTrialsCatchCorrect), mean , std);
    PrintLog("\n");
    PrintLog("# Correction tr: %5d\n", attxNCorrectionTrials);
    PrintLog("# Completed (%): %5d (%s)                    %%correct: %s         \n", attxNCorrectionTrialsCompleted, 
                                                        PctStr$(attxNCorrectionTrials, attxNCorrectionTrialsCompleted),
                                                        PctStr$(attxNCorrectionTrials, attxNCorrectionTrialsCorrect));
    
    return;
end


' FlushState()
'
' Prints the results of a trial to the log window and the output file (if it exists - see
' AttentionExtractInit()). Re-initializes trial variables when finished. 

proc FlushState()
    var s$;
    var isum% := 0;
    var itrial%;
    
    ' Update tallies and counts.....
    if attxIsCorrectionTrial% = 0 then
        attxNTrials += 1;
        if attxIResponse% = responseCorrect% or attxIResponse% = responseIncorrect% then
            isum% := attxICueType% + attxIChangeType%;
            attxNTrialsCompleted += 1;
            if attxIResponse% = responseCorrect% then
                attxNTrialsCorrect += 1;
            endif
            docase
            case isum% = 5 then
                attxRxTimeTowards[attxNTrialsTowards] := attxFRxTime;
                attxNTrialsTowards += 1;
                if attxIResponse% = responseCorrect% then
                    attxNTrialsTowardsCorrect += 1;
                endif
            case isum% = 10 then
                attxRxTimeAway[attxNTrialsAway] := attxFRxTime;
                attxNTrialsAway += 1;
                if attxIResponse% = responseCorrect% then
                    attxNTrialsAwayCorrect += 1;
                endif
            case isum% = 9 or isum% = 6 then
                attxRxTimeCatch[attxNTrialsCatch] := attxFRxTime;
                attxNTrialsCatch += 1;
                if attxIResponse% = responseCorrect% then
                    attxNTrialsCatchCorrect += 1;
                endif
            else
                ' should not happen!
                PrintLog("Error: isum has value %d!\n", isum%);
            endcase
        endif
    else
        attxNCorrectionTrials += 1;
        if attxIResponse% <> responseNone% then
            isum% := attxICueType% + attxIChangeType%;
            attxNCorrectionTrialsCompleted += 1;
            if attxIResponse% = responseCorrect% then
                attxNCorrectionTrialsCorrect += 1;
            endif
        endif
    endif

    
    ' Dump this trial to the log and output file if it exists.
    itrial% := attxITrial%;
    if attxIsCorrectionTrial% = 1 then itrial% *= -1; endif;
    s$ := Print$("%d\t%.4f\t%d\t%.3f\t%.3f\t%d\t%d\t%.3f\t%d\t%.3f\t%.3f\t%.3f\n", 
        itrial%, attxWCueTime, attxICueType%, attxFCueTime, attxFStimTime, 
        attxIChangeType%, attxIUpDown%, attxFChangeTime, attxIResponse%, attxFRxTime, 
        attxBreakFixTime, attxAnsPtTime);
    View(LogHandle()).Print(s$);
    if attxOutputHandle >= 0 then
        View(attxOutputHandle).Print(s$);
    endif
    
    InitTrialVars();
    return;
end



' InitFileVars()
'
' Initialize vars used for file-wide totals and analysis. Warning: the output handle and 
' initialization flag are CLEARED here - do not call after those values have been initialized
' for a given file!

func InitFileVars%(initStr$)
    var status% := 0;
    attxIsInitialized% := 0;
    attxOutputHandle := 0;
    ArrConst(attxRxTimeTowards[], 0);
    ArrConst(attxRxTimeAway[], 0);
    ArrConst(attxRxTimeCatch[], 0);
    attxNTrials := 0;
    attxNTrialsCompleted := 0;
    attxNTrialsCorrect := 0;
    attxNTrialsTowards := 0;
    attxNTrialsAway := 0;
    attxNTrialsTowardsCorrect := 0;
    attxNTrialsAwayCorrect := 0;
    attxNTrialsCatch := 0;
    attxNTrialsCatchCorrect := 0;
    attxNCorrectionTrials := 0;
    attxNCorrectionTrialsCompleted := 0;
    attxNCorrectionTrialsCorrect := 0;

    if Len(initStr$) = 0 then
        attxVersionNumber% := 0;
        attxNumberOfElectrodes% := 1;
        attxXChannel% := 2;
        attxYChannel% := 3;
        attxFrameTriggerChannel% := 4;
        attxFixationPointChannel% := 5;
        attxStimChannel% := 6;
        attxStimChangeChannel% := 7;
        attxReadyChannel% := 8;
        attxEEGChannel% := 9;
        attxWaveMarkChannel% := 10;
        attxNewEEGChannel% := 11;
        attxFixationX := 0;
        attxFixationY := 0;
        attxWindowRadius := 1.5;
        attxAnswerPointOffset := 5;
        attxAnswerPointWindowRadius := 2;
        attxDegreesPerVoltX := 4;
        attxDegreesPerVoltY := 4;
    else
        ' Read first value from string - this is the version number and it will tell us the format of the string.
        if ReadStr(initStr$, attxVersionNumber%) = 1 then
            docase 
            case attxVersionNumber% = 1 then
                if ReadStr(initStr$, attxVersionNumber%, attxNumberOfElectrodes%, attxXChannel%, attxYChannel%, attxFrameTriggerChannel%, 
                            attxFixationPointChannel%, attxStimChannel%, attxStimChangeChannel%, attxReadyChannel%, attxEEGChannel%, 
                            attxWaveMarkChannel%, attxNewEEGChannel%, attxFixationX, attxFixationY, attxWindowRadius, 
                            attxAnswerPointOffset, attxAnswerPointWindowRadius, attxDegreesPerVoltX, attxDegreesPerVoltY) <> 19 then
                    PrintLog("ERROR in init str for this file. Version number = %d. For this version, the first text mark should have 19 values (comma-separated). This file will not be processed!\n", attxVersionNumber%);
                    status% := -1;
                endif
            else
                PrintLog("ERROR: Version number %d not handled.\n", attxVersionNumber%);
                status% := -1;
            endcase
        else
            PrintLog("ERROR: Parameter string format error. Cannot read version number from beginning of string.\n");
            status% := -1;
        endif
    endif
    return status%;
end



' InitTrialVars
'
' Initialize the vars used to track the progress of a trial. As a trial is analyzed these
' vars are set. After analysis of a trial is done these values are dumped to the output file
' and reinitialized here. 

proc InitTrialVars()
    attxICueType% := 0;
    attxIsCorrectionTrial% := 0;
    attxWCueTime := -1;
    attxFCueTime := -1;
    attxFStimTime := -1;
    attxIChangeType% := 0;
    attxIUpDown% := 0;
    attxFChangeTime := -1;
    attxIResponse% := responseNone%;
    attxFRxTime := -1;
    attxBreakFixTime := -1;
    attxAnsPtTime := -1;
    return;
end
    
    
' StateString$(state%)
' 
' Convenience func to return string representation for a state's integer value. 

func StateString$(state%)
    var s$;
    docase
    case attxIState% = attxstateStart% then
        s$ := "START";
    case attxIState% = attxstateFixPt% then
        s$ := "FIXPT";
    case attxIState% = attxstateStim% then
        s$ := "STIM";
    case attxIState% = attxstateChange% then
        s$ := "CHANGE";
    case attxIState% = attxstateAbort% then
        s$ := "ABORT";
    else
        s$ := "UNKNOWN";
    endcase
    return s$;
end


' GetTriggerTimeFor(key$, tKey)
'
' Given a particular SampleKey character and the time it was found, searches for the 
' corresponding trigger for that key. This func ASSUMES CERTAIN CHANNELS FOR TRIGGER 
' DATA! These channels are assigned in the online script. This is a somewhat dangerous
' situation, because those values could change (PROGRAMMER ATTENTION! DON'T CHANGE 
' THOSE CHANNEL VALUES! TODO: Record channel assignments in SampleText marker at 
' daq onset). 
' 

func GetTriggerTimeFor(key$, tKey)
    var tFound := -99;
    docase
    case key$ = "F" or key$ = "G" or key$ = "W"  or key$ = "X" then
        tFound := NextTriggerTransition(5, tKey, 2);
    case key$ = "S" then
        tFound := NextTriggerTransition(6, tKey, 0);
    case key$ = "C" or key$ = "D" or key$ = "c" or key$ = "d" then
        tFound := NextTriggerTransition(7, tKey, 0);
    else
        tFound := -2;
    endcase
    return tFound;
end


' Get the enclosing interval of measurement times given trigger times
' at the start and end of the desired interval. The trigger times are
' likely measured at times slightly different than the measurement times
' of the eye signal channels (which themselves may not be measured at 
' the same times), so we return the closes measurement times before 
' the start trigger time, tStart, and after the end trigger time, tEnd.
'
' Be aware that the start and end times for x and y channels will NOT be 
' the same. They should be close (within 1/sampling rate) of each other.
' Nevertheless, you might find that the number of samples returned is 
' different for the x and y channels. 

func GetEyeSignalIntervals(tStart, tEnd, &txFirstTime, exValues[], &nexValues%, &exBinSize, &tyFirstTime, eyValues[], &neyValues%, &eyBinSize)
    var tyStart, tyEnd;
    var iStatus% := 0;
    
    ' Get bin sizes
    exBinSize := BinSize(2);
    eyBinSize := BinSize(3);
    
    ' Get the data
    nexValues% := ChanData(2, exValues[], tStart, tEnd, txFirstTime);
    neyValues% := ChanData(3, eyValues[], tStart, tEnd, tyFirstTime);
    
    return iStatus%;
end

        
' Find the times at which fixation is broken and when the eye 
' first enters an answer window. The arrays xEye[] and yEye[]
' hold nxEye% and nyEye% values; the fixation point center
' is at (fxC, fyC), its window has radius fRad; the answer
' point offset is aOffset, answer point window radius is aRad.
'
' We require that the first data point be INSIDE the fixation 
' window. If it isn't, then we assume that fixation was broken
' and there's really not much to do. 
'
' If the first data point is inside the fixation window, then 
' we will loop over the points until we find the first point
' when fixation was broken. After that, we look for the first 
' point where one of the answer point windows was entered. 
'
' The values tBreak and tAnswer are the times when fixation 
' is broken and the answer point window entered, respectively. 
' If the data runs out before one or both of those points is 
' reached (i.e. if the trial ended) then those times will be
' returned as -1. 
'
' The return value will be +1(-1) if the 
' upper (lower) answer window was entered. If neither then 
' iAnswer% will be 0. 

func GetEyePositionMilestones%(xEye[], nxEye%, yEye[], nyEye%, tStart, binSize, &tBroke, &tAnswer, fxC, fyC, fRad, aOffset, aRad)
    var iAnswer% := 0;
    const stateInit% := 1;
    const stateFix% := 2;
    const stateBroke% := 3;
    const stateDone% := 4;
    var i%;
    var iState% := stateInit%;
    
    'for i% := 0 to (Min(nxEye%, nyEye%)-1) do
    
    tBroke := -1;
    tAnswer := -1;
    i% := 0;
    repeat
        
        docase
        case iState% = stateInit% then
            
            if IsInsideCircle%(xEye[i%], yEye[i%], fxC, fyC, fRad) = 1 then
                iState% := stateFix%;
            else
                ' This is bad, because we expect that we are initially fixated. 
                iState% := stateDone%;
            endif
            
        case iState% = stateFix% then
            
            if IsOutsideCircle%(xEye[i%], yEye[i%], fxC, fyC, fRad) = 1 then
                iState% := stateBroke%;
                tBroke := tStart + i% * binSize;
            endif
            
        case iState% = stateBroke% then
            
            docase
            case IsInsideCircle%(xEye[i%], yEye[i%], fxC, fyC + aOffset, aRad) = 1 then
                iState% := stateDone%;
                iAnswer% := 1;
                tAnswer := tStart + i% * binSize;
            case IsInsideCircle%(xEye[i%], yEye[i%], fxC, fyC - aOffset, aRad) = 1 then
                iState% := stateDone%;
                iAnswer% := -1;
                tAnswer := tStart + i% * binSize;
            endcase
            
        endcase
       
        i% += 1;
    until i% = Min(nxEye%, nyEye%) or iState% = stateDone%;
    return iAnswer%;
end

