'A very simple function that creates an electrode sampling configuration for passive sampling, with
'parameters taken from the rig configuration.  Basically, this is just yanking out CreateSampleConfiguration
'from a regular script (in this case, CuedAtten)

'We'll need some of these, I don't really know which...try them all for now!
#include "../util/UsreyUtil.s2s"
#include "AttentionExtractFunctions.s2s"
#include "UsreyFixationPoint.s2s"
#include "UsreyDAQ.s2s"
#include "Joystick.s2s"
#include "Unic.s2s"



'And begin setting up the electrode sampling configuration
var index;
var key$;
var XChannel%;
var YChannel%;
var PupilChannel%;
var XChannelPurkinje%;
var YChannelPurkinje%;
var PupilChannelPurkinje%;
var JoyChannelX%;
var JoyChannelY%;
var ok%;

key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Temp\\Filepref";
SampleClear(); 'Set standard sampling state
SampleChannels(64);  '32 does not work, we need more!

' Assign necessary channel numbers
XChannel% := 23;
YChannel% := 24;
PupilChannel% := 25;
XChannelPurkinje% := 26;
YChannelPurkinje% := 27;
PupilChannelPurkinje% := 28;
JoyChannelX% := 21;
JoyChannelY% := 22;
ExcludedChans%[0] := 21;  'Joystick is lowest non-electrode channel used by this function
ExcludedChans%[1] := 35;  'This parallels the current CuedAtten, though not all the dig in channels are created


FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 3);
FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 1);
SampleAutoName$(dataCellName$ + "_ps_000");  'NOTE: maximum of 13 characters!!!  Use "ps" for passive sampling in the autoname
SampleAutoFile(1);  'Enable automatic file naming
SampleAutoComment(0); 'Prompt for comment after sampling
SampleAutoCommit(60); 'Seconds between each file commit

'If the config requests either joystick port
if JoystickPortX% >= 0 then 
    printlog("Joy X channel is %d and joystick X port is %d\n", JoyChannelX%, GetJoystickPortX%());
    ok%:=SampleWaveform(JoyChannelX%, GetJoystickPortX%(), 1000);
    SampleTitle$(JoyChannelX%, "Joy X");
endif;

if JoystickPortY% >= 0 then 
    printlog("Joy Y channel is %d and joystick Y port is %d\n", JoyChannelY%, GetJoystickPortY%());
    ok%:=SampleWaveform(JoyChannelY%, GetJoystickPortY%(), 1000);
    SampleTitle$(JoyChannelY%, "Joy Y");
endif;

'Set up eye channels, normally this would NOT be independent for X/Y, but who know what wacky thing we might want to do in testing
if EyeXPort% > -1 then  'don't set up eye channels unless we are looking at eye position
    ' Set up eye X channel
    SampleWaveform(XChannel%,GetEyeXPort%(),1000);
    SampleTitle$(XChannel%,"Eye X");
endif;

if EyeYPort% > -1 then  'don't set up eye channels unless we are looking at eye position
    ' Set up eye Y channel 
    SampleWaveform(YChannel%,GetEyeYPort%(),1000);
    SampleTitle$(YChannel%,"Eye Y");
endif;

if PupilPort% > -1 then
    SampleWaveform(PupilChannel%,PupilPort%,1000);       
    SampleTitle$(PupilChannel%,PupilPortLabel$);
endif;

if EyeXPortPurkinje% > -1 then  'don't set up eye channels unless we are looking at eye position
    ' Set up eye X channel
    SampleWaveform(XChannelPurkinje%,GetEyeXPortPurkinje%(),1000);
    SampleTitle$(XChannelPurkinje%,"Eye X P");
endif;

if EyeYPortPurkinje% > -1 then  'don't set up eye channels unless we are looking at eye position
    ' Set up eye Y channel 
    SampleWaveform(YChannelPurkinje%,GetEyeYPortPurkinje%(),1000);
    SampleTitle$(YChannelPurkinje%,"Eye Y P");
endif;

if PupilPortPurkinje% > -1 then
    SampleWaveform(PupilChannelPurkinje%,PupilPortPurkinje%,1000);       
    SampleTitle$(PupilChannelPurkinje%,PupilPortLabelPurkinje$);
endif;

GetElectrodeParameters();
CreateElectrodeSamplingConfiguration32(1, 1+numWavemarkPorts%, ExcludedChans%[]);  'Allows a lot of channels while preventing accidentally re-defining a channel

SampleTextMark(200);  'increase number of allowed characters, 1 is so stingy!

SampleSequencer(script$ + "Tuning.pls");  'This may not really be necessary

SampleOptimise(2,2,Get1401Type%(),2,50);  'otherwise: full optimize timing, channels may have different rates, Power1401 (lowest common denominator, so eh), low usPerTime of 2, high usPerTime of 50

SampleMode(1); 'Continuous sampling

Message("Sampling configuration created, please check sampling config to verify results.");