

'CuedAtten - a re-work of the AttenGoNoGo script to allow cue images and a few other changes
#include "../util/ChannelUtilities.s2s"
#include "../util/UsreyUtil.s2s"
#include "AttentionExtractFunctions.s2s"
#include "UsreyFixationPoint.s2s"
#include "UsreyDAQ.s2s"
#include "Joystick.s2s"
#include "Unic.s2s"


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' 	CuedAtten script dialog START
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''


'	Vars that control the Attention script 

const caMaxTrl% := 5000;  'should be enough, yes?
var caNumberOfTrials%;  'will read from input file

var specFileName$;
var templateFileName$;
var EEGBaseName$;


'Main Dialog variables 
var caAcquisitionTime;
var caInterTrialTime;
var caInterTrialTime2;
var caAbortWaitTime;
var caAbort2WaitTime;
var caMissPenalty;
var caFalseAlarmWaitTime;
var caFalseAlarmCheckWindow;
var caTrainingOptions%;
var caTrainingHoldTime;
var caFixAlternationTime;
var caRequireFixation%;
var caAllowFixationBreakAfterCC%;
'var caAllowSaccadeResponse%;  'this was a proposed intermediate step that Evan decided was unnecessary
var caRequireSaccadeResponse%;
var caAdditionalWindowRadius;
var caReturnForReward%;
var inputFileHandle% := -1;  'start negative, requires user to open an input file
var templateFileHandle% := -1;  'start negative, requires user to open a template file
var caBackgroundColor$ := "gray";  'for now just hardcoding the bg color, if we need it we can put this back in from AttenGNG
var caStartTrial% := 1;
'var caCycleTrials%;  'when we get to the bottom do we go back to the top of the slide, do we turn, do we stop, do we go for a ride?  (Sadly, this is not used because Evan didn't want it.)
var caInterTrialTimeRand; 
var caTextCallbackItemNumber%;
var caTextCallbackItemNumber2%;
var caSpecFileOpen%;
var caTemplateFileOpen%;
var caInitialDeadTime;
var caRecordEEG%;
var caAnswerWindowMin;
var caWithholdNoGoReward%;
var tempState%;  'we will use this in the idle loop when there is more than one state to go to, and we need to pass into CheckUnicChangeStateTo()

'Counter vars for attention script 
var caCountAllTrials% := 0;
var caCountAllTrialsCorrect% := 0;
var caCountAllTrialsIncorrect% := 0;
var caCountAllTrialsAbort% := 0;
var caCountTowardTrials% := 0;
var caCountTowardTrialsCorrect% := 0;
var caCountTowardTrialsIncorrect% := 0;
var caCountTowardTrialsAbort% := 0;
var caCountAwayTrials% := 0;
var caCountAwayTrialsCorrect% := 0;
var caCountAwayTrialsIncorrect% := 0;
var caCountAwayTrialsAbort% := 0;
var caCountRightTrials% := 0;
var caCountRightTrialsCorrect% := 0;
var caCountRightTrialsIncorrect% := 0;
var caCountRightTrialsAbort% := 0;
var caCountLeftTrials% := 0;
var caCountLeftTrialsCorrect% := 0;
var caCountLeftTrialsIncorrect% := 0;
var caCountLeftTrialsAbort% := 0;
var caCountNontargetTrials% := 0;
var caCountNontargetTrialsCorrect% := 0;
var caCountNontargetTrialsIncorrect% := 0;
var caCountNontargetTrialsAbort% := 0;


' constants for Main dialog
const caMainDlgAcquisitionTime% := 1;
const caMainDlgHoldFixationTime% := 2;
const caMainDlgITI% := 3;
const caMainDlgInterTrialTimeRand% := 4;
const caMainDlgAbortWait% := 5;
const caMainDlgAbort2Wait% := 6;
const caMainDlgFAPenalty% := 7;
const caMainDlgFAWindow% := 8;
const caMainDlgMissPenalty% := 9;
'const caMainDlgJoyRight% := 10;
const caMainDlgTrainingOptions% := 10;
const caMainDlgTrainingHoldTime% := 11;
const caMainDlgFixAlternationTime% := 12;
const caMainDlgRequireFixation% := 13;
const caMainDlgAdditionalWindowRadius% := 14;
const caMainDlgReturnForReward% := 15;
const caMainDlgStartTrial% := 16;
const caMainDlgInitialDeadTime% := 17;
const caMainDlgRecordEEG% := 18;
const caMainDlgEEGBaseName% := 19;
const caMainDlgSaccadeAnswerWindow% := 20;
const caMainDlgWithholdNoGoReward% := 21;


'const caMainDlgCycleTrials% := 15;  'Not used



'variables for Henry's tuning curve version
var caCurrTrialIndex%;         'We'll need to keep track of the current trial index
var FAIsResponse%;              'if 1, use "response abort", otherwise use regular abort
var expectedAnswer%;            'keeps track of expected answer, saves a bunch of redundant code

'variables read in from input file
var caCueOn[caMaxTrl%];  'time of cue onset
var caCueOff[caMaxTrl%];  'time of cue offset
var caEpoch1[caMaxTrl%];  'time of stimulus onset
var caEpoch2[caMaxTrl%];  'time of contrast change
var caEpoch3[caMaxTrl%];  'time of epoch 3
var caEpoch4[caMaxTrl%];  'time of epoch 4
var caStimOff[caMaxTrl%];  'time of stimulus offset
var caContrast1Init[caMaxTrl%];  'initial contrast for stimulus 1
var caContrast1Final[caMaxTrl%];  'contrast of stimulus 1 after contrast change
var caContrast1Epoch3[caMaxTrl%];  'contrast of stimulus 1 in epoch 3
var caContrast1Epoch4[caMaxTrl%];  'contrast of stimulus 1 in epoch 4
var caContrast2Init[caMaxTrl%];  'initial contrast of stimulus 2
var caContrast2Final[caMaxTrl%];  'contrast of stimulus 2 after contrast change
var caContrast2Epoch3[caMaxTrl%];  'contrast of stimulus 2 in epoch 3
var caContrast2Epoch4[caMaxTrl%];  'contrast of stimulus 2 in epoch 4
var caAttendLoc%[caMaxTrl%];  'direction of attention (1/2 for target/distractor1)
var caAlternateGoTime[caMaxTrl%];  'time at which a response changes from an interrupt to a response, if different than the time of the contrast change
'note that if AttendLoc and CorrectResponse are the same, the trial is valid.  (Barring possible 0/other entry in Response, but not accounting for that until it happens)
'Note that for the time being this is actually not used because it is a go/no-go design
var caCueFile$[caMaxTrl%];  'location of cue file
var b1$[caMaxTrl%];  'file read variable, will ignore
var b2$[caMaxTrl%];  'file read variable, will ignore
var b3$[caMaxTrl%];  'file read variable, will ignore
var caFileFixParams$[caMaxTrl%];  'input file fixation parameters
var caFileGrating1Params$[caMaxTrl%];  'input file grating 1 parameters
var caFileGrating2Params$[caMaxTrl%];  'input file grating 2 parameters

var caWhichLocationChanges%[caMaxTrl%];  'we will determine which location (if any) changes, 1 = "target", 2 = "distractor1", 0 = "none"

'Variables for read in from template file - we will allow as many as there are trials but we do not expect this many
var caTemplateLoc$[caMaxTrl%];
var caTemplateDur[caMaxTrl%];
var caNumberOfTemplates%;
var caCurrTemplate% := 0;
var tLastTemplateTime;
var tThisTemplateDuration := -1;  'we could actually just index the variable, but I think this will make things clearer, start at -1
var caTemplateIsLoaded%;
var caEEGIsRecording%;

var caFixationTime;  'not yet filled, probably do that in PrepareTrial
var totalStimDur;  'same thing
var caJoyRight;  'voltage of rightward joystick
var caJoyLeft;  'voltage of leftward joystick, in case Evan wants to switch
var caIsOvershot$;

' Overall script control vars
var Pause% := 0;
var advanceOnAbort% := 1;  'Evan now wants to advance on aborts.  Making this a variable (not in dialog) for easy switching back if necessary.
var trialNotStarted%;  'This could get sticky.  Right now, this defaults to 0 (assume trial started) and is set to one for specific aborts prior to StateStartTrial.  Perhaps could default to 1, then set to 0 in StateStartTrial.
var rewardWithheld% := 0;
var tTrialStart;
'var caAudibleElectrode% := 0;  'looks like this will not work

' Channel numbers and handles
var StimHandle%;			' handle for stimulus application
var DataWindow%;		' 
var XChannel%;
var YChannel%;
var PupilChannel%;
var XChannelPurkinje%;
var YChannelPurkinje%;
var PupilChannelPurkinje%;
var JoyChannel%;

var FrameTriggerChannel%;
var SynchChannel%;
var FixationPointChannel%;
var StimChannel%;
var StimChangeChannel%;
var ReadyChannel%;
var UtilityChannel%;
var TimingChannel%;

'Unic channels, ports
var unicFileChannel%;   'This channel will register a pulse when the unic server notices the unic file has changed
var unicCommandSuccessChannel%;  'This channel will register a pulse when the unic server receives success from Nic after sending a command
var unicStimulatingChannel%;   'This channel will go high when stimulation is on
var unicFilePort%;
var unicCommandSuccessPort%;
var unicStimulatingPort%;

' tuning curves
var TuningWindow%[8];	' one for each channel. There'd better not be more than 8 channels! 
' XY window stuff
var XYWindow%;			' 
var iStimChannel%;	' channel number for stimulus in xy window
var iFixationWindowChannel%;' channel number for fixation window in xy window
var iMonitorChannel%;	' channel number for monitor position display in xy window
var iAnswerWindowChannelMain%;  'channel number for main stimulus answer window display in xy window
var iAnswerWindowChannelDist1%;  'channel number for distracter 1 answer window display in XY window
var iAnswerWindowChannelDist2%;  'channel number for distracter 2 answer window display in XY window
var iAnswerWindowChannelDist3%;  'channel number for distracter 3 answer window display in XY window
var iAnswerWindowChannelDist4%;  'channel number for distracter 4 answer window display in XY window

' Display stuff
var FixWindowX[36],FixWindowY[36];	' points for displaying fixation window in xy view
var windowX[36], windowY[36];

' dummy vars
var iScript%;

'for display in experimenter view of locations of stimuli
var mainX;  'the main grating patch is expected to be the one located over the receptive field
var mainY;
var mainW;
var mainH;
var dist1X;  'there are also four possible distracters, these are set in config
var dist1Y;
var dist1W;
var dist1H;

'Idle loop variables
var tNow;               ' latest time for which there are values recorded. Used in IdleProcessing
'var xEye;		        ' eye positions
'var yEye;
var tLastUpdate:=-1;	' last time view was updated
var tTrigger;           ' temp var for newly discovered trigger times
var vTrigger;		    ' set by NextTime to indicate trigger transition
var tLast;		        ' last time the idle loop ran
var tStateStart:=-1;	' time that present state started. Used to measure wait time, fixation time, etc. 
var tLastTrigger:=-1;	' last trigger time. New triggers have to be greater than this	
var tStimOn:=-1;	    ' time that stim was turned on. Used to measure spike rates 
var iState%;
var stateNext%;         ' for doing the Unic command check
var tempanswer%;
var thisContrast%; 'for now just making everything compile
var joystickHasBeenCentered%;
var skipToCheckJoystickInRight%;
var joystickInStartPosition%;
var answerWindowTime;
var answerWindowStart;
var answerWindowWhich%;


' Constants for states
const stateStartTrial%:=0;		        ' Start trial state
const stateWaitForFixPtOn%:=1;		    ' Waiting for fixation/cue point return trigger (on)
const stateHoldFixationToStimOn%:=2;		    ' Maintaining fixation with cue color point and lollipops up
const stateWaitForStimOn%:=3;		    ' Wait for stimulus return trigger (on)
'const stateWaitForContrastChange%:=4;	' Wait for indication that contrast change has happened
const stateWaitForAcquisition%:=5;	    ' Waiting for subject to acquire fixation point
const stateHoldFixationToCC%:=6;		    ' Holding fixation point
const stateAbort%:=7;			        ' Failed trial state
const stateWaitForAnswer%:=8;			' waiting for answer
const stateAbortWait%:=9;	            ' time out after failed trial
const stateVSGWait%:=10;		        ' wait for vsg to send ready signal #1
const stateVSGWaitConfirm%:=11;		    ' waif for vsg to send ready signal #2
const stateTrialCompleted%:=12;		    ' trial has been completed successfully
'const stateDone%:=13;	
const StateAbortWaitForBlank%:=14;
'const stateBlockCompleted%:=16;
'const stateStartBlock%:=17;
const stateTrialCompletedWaitForBlank% := 18;
const stateTrialCompletedPause% := 19;
'const stateWaitForWhitePointOn%:=20;    ' Waiting for fixation white point  This white point stuff is mostly or wholly excised
'const stateWhitePointFixation%:=21;     ' white point up, remain fixation
'const stateNoResponse% := 22;
const stateFalseAlarmWait% := 23;
const stateCheckFalseAlarm% := 24;
const stateMiss% := 25;
'const stateCorrectRejection% := 26;
const stateWaitForJoystickInCenter% := 27;
'const stateWaitForJoystickInLeft% := 28;
const stateWaitForJoystickInRight% := 29;
const stateHoldJoystickInRight% := 30;
const stateWaitForJoystickInCenterAndReward% := 31;
const stateTrainingFixPtOff% := 32;
const stateWaitForBlankTraining% := 33;
const stateTrainingWait% := 34;
const stateWaitForAnswerFC% := 35;
const stateInitialDeadTime% := 36;
const stateCheckFalseAlarmSaccade% := 37;
const stateWaitForAnswerSaccade% := 38;
const stateUnicInitWait% := 39;
const stateUnicInitWaitConfirm% := 40;
const stateUnicCommandWait% := 41;
const stateUnicCommandConfirm% := 42;
const stateUnicPreInitialDeadTime% := 43;
const stateCheckForTemplateAdvance% := 44;		' Before checking for joystick movements, introduced to allow EEG recording to be started between trials, if necessary
const stateUnloadTemplate% := 45;
const stateStopEEGRecording% := 46;
const stateDetermineNextTemplate% := 47;
const stateStartEEG% := 48;
const stateLoadTemplate% := 49;




const trialtypeAttendToward% := 100;
const trialtypeAttendAway% := 101;
const trialtypeNoAttend% := 102;  'This is currently implemented in PrepareTrial but DISALLOWED in StateStartTrial of the IdleProcessing loop and checked for when opening the control file.
var trialType%;
var nTrialsStarted%:=0;
var nTrialsCompleted%:=0;
var nTrialsAborted% :=0;		' 
var abortIsPostCC% := 0;
var nBlocksCompleted%:=0;
var iAnswer%;
var trialCatch%;
var trialIsGo%;
var trialTargetLoc%;
var trialAttendLoc%;  'This value is actually unused (at least right now)!
var trialResponseDirection%;  'because we shouldn't really call this "attend loc" even if we get that value from the attend location position in the control file.
var trialHazardFunctionTime;
var trialEarlyGoTime;
var trialCueName$;
var trialCount8bit1%;
var trialCount8bit2%;

var caNumWavemarks%;
var caNumContinuous%;
var caWavemarkPorts%[64];
var caContinuousPorts%[64];


' Assign channel numbers for eye X,Y and trigger. 
XChannel% := 23;
YChannel% := 24;
PupilChannel% := 22;
XChannelPurkinje% := 38;
YChannelPurkinje% := 39;
PupilChannelPurkinje% := 40;
FrameTriggerChannel% := 25;
FixationPointChannel% := 26;
StimChannel% := 27;
StimChangeChannel% := 28;  '??
ReadyChannel% := 29;
JoyChannel% := 21;
unicFileChannel% := 33;
unicCommandSuccessChannel% := 34;
unicStimulatingChannel% := 35;
UtilityChannel% := 36;
TimingChannel% := 37;
unicFilePort% := 5;
unicCommandSuccessPort% := 6;
unicStimulatingPort% := 7;
ExcludedChans%[0] := 21;  'Joystick is lowest non-electrode channel used by this function
ExcludedChans%[1] := 40;  'TimingChannel% is highest non-electrode channel used by this function



LogInit(1);
InitJoystickX(JoyChannel%,GetJoystickPortX%()); 'now calls InitJoystickX - we must do this BEFORE calling the main dialog

UseTwo1401s% := DoWeUseTwo1401s%();
GetPortsAndNumWMsWFs%(caNumWavemarks%,caNumContinuous%,caWavemarkPorts%[],caContinuousPorts%[]);

' Check for valid data file path
if Len(dataDataSet$) = 0 then
	Message("No data set is selected! Edit Data parameters...");
	' Might be nice to open the dialog here....
	halt;
endif;

' run dialog
'iScript% := AttentionScriptDialog%();
iScript% := MainDialog%();  'the dialog box will open an input file (inputFileHandle%)
if iScript% <> 1 then
	PrintLog("User cancel - exit gracefully\n");
	Halt;
endif;

'parse input file, but only if an input file exists (training options 3-5)
'also, parse template file, but only if a template file exists
if caTrainingOptions% > 2 then
    
    'begin parsing input file
    'the input file should be open already - the MainDialog%() opens it via OpenInputFile()/UseInputFile()
    if caSpecFileOpen% = 0 then
        
        PrintLog("Error - spec file is not open, but should be - exitting gracefully\n");
        message("Error - the spec file is not open, but should be!  Quitting!");
        
        'Close the template file if it happens to be open before closing down
        if caTemplateFileOpen% > 0 then
            View(templateFileHandle%);
            FileClose();
        endif;
        
        Halt;
        
    else 'read the input file
        View(inputFileHandle%);
        
        readsetup(",","	 ","","","	"); 'Hard separator is a comma
        'Soft separators are spaces and tabs
        'No delimiter is set for the start of a string
        'No delimiter is set for the end of a string
        'The hard separator character for strings that have no start delimiter is set to a tab
        'This combo will gracefully deal with multiple tabs anywhere and any number
        'of leading (but NOT trailing) spaces
        
        var testRead$[13];
        var twelveVals[12];
        var inputStyle%;
        'read(testRead$[0],testRead$[1],testRead$[2],testRead$[3],testRead$[4],testRead$[5],testRead$[6],
        '     testRead$[7],testRead$[8],testRead$[9],testRead$[10],testRead$[11],testRead$[12]);
        read(testRead$[0:13]);  'read all thirteen in one fell swoop
        if testRead$[12] = "" or testRead$[12] = "|" then
            inputStyle% := 0;  'input is original 2-epoch version (12 vars pre-pipe)
        else
            inputStyle% := 1;  'input is new 4-epoch version (18 vars pre-pipe) 
            if caTrainingOptions% = 5 then
                message("The 4-epoch input file is currently not compatible with a forced-choice experiment!");
                halt;
            endif;
        endif;
        FileClose(); 'close the file, we need to start reading again from the top
        
        inputFileHandle% := FileOpen(specFileName$,8,0); 're-open file
        View(inputFileHandle%);
        readsetup(",","	 ","","","	");
        
        var eof% := 1;
        var j%;
        
        if inputStyle% = 0 then 'do the 2-epoch read
            while eof% > 0 do  'the nice thing about READ is that when we tack junk onto the end of the line, we don't have to rewrite this code, anything left over on the line is just skipped, second call to read starts at beginning of second line 
                eof% := read(caCueOn[j%],caCueOff[j%],caEpoch1[j%],caEpoch2[j%],caStimOff[j%],
                caContrast1Init[j%],caContrast1Final[j%],caContrast2Init[j%],caContrast2Final[j%],
                caAttendLoc%[j%],caAlternateGoTime[j%],caCueFile$[j%],b1$[j%],caFileFixParams$[j%],b2$[j%],caFileGrating1Params$[j%],b3$[j%],caFileGrating2Params$[j%]);  
                j%+=1;  'increment count
                'printlog("line is %d and caAttendLoc is %d\n",j%-1,caAttendLoc%[j%-1]);
            wend
        else 'do the 4-epoch read
            while eof% > 0 do  'the nice thing about READ is that when we tack junk onto the end of the line, we don't have to rewrite this code, anything left over on the line is just skipped, second call to read starts at beginning of second line
                'Can't use this because there are more than 20 inputs...                
'                eof% := read(caCueOn[j%],caCueOff[j%],caEpoch1[j%],caEpoch2[j%],caEpoch3[j%],caEpoch4[j%],caStimOff[j%],
'                caContrast1Init[j%],caContrast1Final[j%],caContrast1Epoch3[j%],caContrast1Epoch4[j%],
'                caContrast2Init[j%],caContrast2Final[j%],caContrast2Epoch3[j%],caContrast2Epoch4[j%],
'                caAttendLoc%[j%],caAlternateGoTime[j%],caCueFile$[j%],b1$[j%],caFileFixParams$[j%],b2$[j%],caFileGrating1Params$[j%],b3$[j%],caFileGrating2Params$[j%]); 
                
                'So read some of the values into an array
                eof% := read(twelveVals[0:12],caContrast2Final[j%],caContrast2Epoch3[j%],caContrast2Epoch4[j%],
                caAttendLoc%[j%],caAlternateGoTime[j%],caCueFile$[j%],b1$[j%],caFileFixParams$[j%],b2$[j%],caFileGrating1Params$[j%],b3$[j%],caFileGrating2Params$[j%]); 
                
                'and then deal that array out
                caCueOn[j%] := twelveVals[0];
                caCueOff[j%] := twelveVals[1];
                caEpoch1[j%] := twelveVals[2];
                caEpoch2[j%] := twelveVals[3];
                caEpoch3[j%] := twelveVals[4];
                caEpoch4[j%] := twelveVals[5];
                caStimOff[j%] := twelveVals[6];
                caContrast1Init[j%] := twelveVals[7];
                caContrast1Final[j%] := twelveVals[8];
                caContrast1Epoch3[j%] := twelveVals[9];
                caContrast1Epoch4[j%] := twelveVals[10];
                caContrast2Init[j%] := twelveVals[11];
                
                
                j%+=1;  'increment count
                'printlog("line is %d and caCueFile is %s\n",j%-1,caCueFile$[j%-1]);
            wend
        endif
        
        
        caNumberOfTrials% := j%-1;  'we need to decrement for the final increment because the final read will "fail", but not decrement for the penultimate increment because j% is a zero-based index
        
        'Close the input file opened by the dialog box
        View(inputFileHandle%);
        FileClose();
        
        
        'Do initial dummyproofing of requested cue images - we will also dummyproof the contrast changes here
        'First, consolidate the list of images
        var nUniqueCues% := 1;  'we'll start with one unique cue file, and go from there
        var uniqueCueFile$[caMaxTrl%];
        var jj%;  'another looping variable
        var found := 0;
        uniqueCueFile$[0] := caCueFile$[0];  'just put the first one in.
        for j% := 1 to caNumberOfTrials%-1 do  'don't need to start at 0, first file is unique by definition
            'here is the bit that consolidates the images
            found := 0;
            jj% := 0;
            while jj% <= nUniqueCues%-1 do
                if caCueFile$[j%] = uniqueCueFile$[jj%] then  'we've already got this one
                    found := 1;
                    jj% := nUniqueCues%;  'break the while loop
                else
                    jj% += 1;
                endif
            wend
            if found = 0 then 
                uniqueCueFile$[nUniqueCues%] := caCueFile$[j%];
                nUniqueCues% += 1;
            endif
        next
        
        'here is the bit that assigns caWhichLocationChanges%[] - this will help us determine if it is a catch trial or not
        for j% := 0 to caNumberOfTrials%-1 do  'THIS needs to start at 0
            docase
            case (caContrast1Init[j%] <> caContrast1Final[j%]) and (caContrast2Init[j%] <> caContrast2Final[j%]) then
                message("On trial #%d, BOTH gratings change contrast, this is not currently allowed!  Quitting!",j%+1);
                halt;
            case caContrast1Init[j%] <> caContrast1Final[j%] then
                caWhichLocationChanges%[j%] := 1;
            case caContrast2Init[j%] <> caContrast2Final[j%] then
                caWhichLocationChanges%[j%] := 2; 
            else
                caWhichLocationChanges%[j%] := 0; 
            endcase

            if caAttendLoc%[j%] <> 0 and caAttendLoc%[j%] <> 1 and caAttendLoc%[j%] <> 2 and caAttendLoc%[j%] <> 3 then
                message("On trial #%d, there is no defined attend location, this is not currently allowed!  Quitting!",j%);
                halt;
            endif;
        next
        
        
        'Second make sure all images have the .bmp extension  (I'm not sure why this was commented out)
'        for j% := 0 to nUniqueCues%-1 do
'            if Right$(uniqueCueFile$[j%],4) <> ".bmp" then
'                message("The cue image '%s' is not a .bmp!  Quitting!",uniqueCueFile$[j%]);
'                halt;
'            endif
'        next
        
        'Third, make sure all image files exist...I don't know if there is a good way of doing this outside of opening them!
        'However, we only have to open one instance of each cue - the unique list - so that should save lots of time
        var openSuccess%;
        '(I'm not sure why this was commented out either)
'        for j% := 0 to nUniqueCues%-1 do
'            openSuccess% := FileOpen(uniqueCueFile$[j%],9);
'            if openSuccess% > 0 then 'just close it
'                view(openSuccess%);
'                FileClose();
'            else
'                message("The cue image '%s' does not exist!  Quitting!",uniqueCueFile$[j%]);
'                halt;
'            endif
'        next
        
    endif
    
    'end parsing input file
    
    
    'begin parsing template file
    'the template file should be open already - the MainDialog%() opens it via OpenTemplateFile()/UseTemplateFile()
    docase
    case caRecordEEG% = 1 and caTemplateFileOpen% = 0 then
        
        PrintLog("Error - template file is not open, but should be - exitting gracefully\n");
        message("Error - the template file is not open, but should be!  Quitting!");
        Halt;
        
    case caRecordEEG% = 1 then 'read the template file
        View(templateFileHandle%);
        
        readsetup(",","	 ","","","	"); 'Hard separator is a comma
        'Soft separators are spaces and tabs
        'No delimiter is set for the start of a string
        'No delimiter is set for the end of a string
        'The hard separator character for strings that have no start delimiter is set to a tab
        'This combo will gracefully deal with multiple tabs anywhere and any number
        'of leading (but NOT trailing) spaces
        'variables eof% and j% already exist
        eof% := 1;  
        j% := 0;
        while eof% > 0 do  'the nice thing about READ is that when we tack junk onto the end of the line, we don't have to rewrite this code, anything left over on the line is just skipped, second call to read starts at beginning of second line 
            eof% := read(caTemplateLoc$[j%],caTemplateDur[j%]);  
            j%+=1;  'increment count
            'printlog("line is %d and caTemplateLoc is %s and caTemplateDur is %f\n",j%,caTemplateLoc$[j%-1],caTemplateDur[j%-1]);
        wend
        caNumberOfTemplates% := j%-1;  'we need to decrement for the final increment because the final read will "fail", but not decrement for the penultimate increment because j% is a zero-based index
        
        'Make sure all specified templates exist
        'First, consolidate the list of templates
        var nUniqueTemplates% := 1;  'we'll start with one unique template file, and go from there
        var uniqueTemplateFile$[caMaxTrl%];
        uniqueTemplateFile$[0] := caTemplateLoc$[0];  'just put the first one in.
        for j% := 1 to caNumberOfTemplates%-1 do  'don't need to start at 0, first file is unique by definition
            'here is the bit that consolidates the images
            found := 0;
            jj% := 0;
            while jj% <= nUniqueTemplates%-1 do
                'while we're in here, let's make sure that we don't get hurt by "gap" vs "Gap" vs "GAP"
                if LCase$(caTemplateLoc$[j%]) = "gap" then
                    caTemplateLoc$[j%] := "gap";  'now any instance of "gap" is lowercase
                endif;
                if caTemplateLoc$[j%] = uniqueTemplateFile$[jj%] then  'we've already got this one
                    found := 1;
                    jj% := nUniqueTemplates%;  'break the while loop
                else
                    jj% += 1;
                endif
            wend
            if found = 0 then 
                uniqueTemplateFile$[nUniqueTemplates%] := caTemplateLoc$[j%];
                nUniqueTemplates% += 1;
            endif
        next
        
        'Make sure all templates exist...I don't know if there is a good way of doing this outside of opening them!
        'However, we only have to open one instance of each template - the unique list - so that should save lots of time
        for j% := 0 to nUniqueTemplates%-1 do
            if uniqueTemplateFile$[j%] <> "gap" then
                openSuccess% := FileOpen(uniqueTemplateFile$[j%],9);
                if openSuccess% > 0 then 'just close it
                    view(openSuccess%);
                    FileClose();
                else
                    message("The template '%s' does not exist!  Quitting!",uniqueTemplateFile$[j%]);
                    halt;
                endif
            endif
        next
        
        'Close the template file opened by the dialog box
        View(templateFileHandle%);
        FileClose();
        
        
        'halt  'testing only
    else 'no template file exists, so...don't do anything.
        
    endcase;
    

    
    
    'end parsing template file
    
endif;


'''So at this point, we have run the dialog, checked for the existence and .bmp extension of all of the images, and have found success (except several of those checks are disabled)



if UseTwo1401s% = 0 then
    CreateSampleConfiguration();
    
    ' Get display windows ready
    InitializeWindows();
    
    ' Prepare the toolbar buttons
    InitializeToolbar();
else
    InitializeToolbar();
endif;

'Create Sample Configuration
'CreateSampleConfiguration();

' Get display windows ready
'InitializeWindows();

' Prepare the toolbar buttons
'InitializeToolbar();

'''End of script, once the toolbar closes, we're done.


proc GetMainDialogParameters()
	var stmp$;
	var key$;
	key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Scripts\\CuedAtten";
    
    
	caAcquisitionTime := GetFloatRegistryValue(key$, "AcquisitionTime", 1.0);
	caInterTrialTime := GetFloatRegistryValue(key$, "InterTrialTime", 1.0);
	caAbortWaitTime := GetFloatRegistryValue(key$, "AbortWaitTime", 1.0);
    caAbort2WaitTime := GetFloatRegistryValue(key$, "Abort2WaitTime", 1.0);
    caMissPenalty := GetFloatRegistryValue(key$, "MissPenalty", 1.0);
    caFalseAlarmWaitTime := GetFloatRegistryValue(key$, "FalseAlarmWaitTime", 1.0);
    caFalseAlarmCheckWindow := GetFloatRegistryValue(key$, "FalseAlarmCheckWindow", 1.0);     
    caTrainingHoldTime := GetFloatRegistryValue(key$, "TrainingHoldTime", 1.0);
    caFixAlternationTime := GetFloatRegistryValue(key$, "FixAlternationTime", 1.0);
    caJoyRight := GetFloatRegistryValue(key$, "JoyRight", 1.0); 
    caRequireFixation% := GetIntRegistryValue%(key$, "RequireFixation", 1);
    caAdditionalWindowRadius := GetFloatRegistryValue(key$, "AdditionalWindowRadius", 1.0);
    caReturnForReward% := GetIntRegistryValue%(key$, "ReturnForReward", 1);
    caTrainingOptions% := GetIntRegistryValue%(key$, "TrainingOptions", 0);
    caInterTrialTimeRand := GetFloatRegistryValue(key$, "InterTrialTimeRand", 1.0);
    caFixationTime := GetFloatRegistryValue(key$, "FixationTime", 1.0);
    specFileName$ := GetStringRegistryValue$(key$, "SpecFileName", "none");
    templateFileName$ := GetStringRegistryValue$(key$, "TemplateFileName", "none");
    caInitialDeadTime := GetFloatRegistryValue(key$, "InitialDeadTime", 0.0);
    caRecordEEG% := GetIntRegistryValue%(key$, "EEGSignals", 0);
    caAnswerWindowMin := GetFloatRegistryValue(key$, "AnswerWindowMin", 0.0);
    caWithholdNoGoReward% := GetIntRegistryValue%(key$, "WithholdNoGoReward", 0);
    EEGBaseName$ := GetStringRegistryValue$(key$, "EEGBaseName", "None Entered");
    
    
    
end;

proc SaveMainDialogParameters()
	var key$;
	var stmp$;
	key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Scripts\\CuedAtten";
    
	SetFloatRegistryValue(key$, "AcquisitionTime", caAcquisitionTime);
	SetFloatRegistryValue(key$, "AbortWaitTime", caAbortWaitTime);
    SetFloatRegistryValue(key$, "Abort2WaitTime", caAbort2WaitTime);
    SetFloatRegistryValue(key$, "MissPenalty", caMissPenalty);
    SetFloatRegistryValue(key$, "FalseAlarmWaitTime", caFalseAlarmWaitTime);
    SetFloatRegistryValue(key$, "FalseAlarmCheckWindow", caFalseAlarmCheckWindow);
	SetFloatRegistryValue(key$, "InterTrialTime", caInterTrialTime);
    SetFloatRegistryValue(key$, "TrainingHoldTime", caTrainingHoldTime);
    SetFloatRegistryValue(key$, "FixAlternationTime", caFixAlternationTime);
    SetFloatRegistryValue(key$, "JoyRight", caJoyRight);
    SetIntRegistryValue(key$, "RequireFixation", caRequireFixation%);
    SetFloatRegistryValue(key$, "AdditionalWindowRadius", caAdditionalWindowRadius);
    SetIntRegistryValue(key$, "ReturnForReward", caReturnForReward%);
    SetIntRegistryValue(key$, "TrainingOptions", caTrainingOptions%);
    SetFloatRegistryValue(key$, "InterTrialTimeRand", caInterTrialTimeRand);
    SetFloatRegistryValue(key$, "FixationTime", caFixationTime);
    SetStringRegistryValue(key$, "SpecFileName", specFileName$);
    SetStringRegistryValue(key$, "TemplateFileName", templateFileName$);
    SetFloatRegistryValue(key$, "InitialDeadTime", caInitialDeadTime);
    SetIntRegistryValue(key$, "EEGSignals", caRecordEEG%);
    SetFloatRegistryValue(key$, "AnswerWindowMin", caAnswerWindowMin);
    SetIntRegistryValue(key$, "WithholdNoGoReward", caWithholdNoGoReward%);
    SetStringRegistryValue(key$, "EEGBaseName", EEGBaseName$);
    
end;



func MainDialog%()
    var i%;
    const nOpts% := 6;
    var trainingOptionsList$[nOpts%];
    var fixationOptionsList$[6];
    var tempAW;
    var twoInts%[2];
   
    
    
    trainingOptionsList$[0] := "Reward for lever";    '"Lever - Instant Reward - Release - Wait ITI";
    trainingOptionsList$[1] := "Reward for lever - hold - release";   '"Lever - Hold - Release - Reward - Wait ITI";
    trainingOptionsList$[2] := "Fixation training";    '"FixPt ON: Lever - Hold - Release - Reward - Wait ITI";
    trainingOptionsList$[3] := "Under input file control - cue training, don't go on uncued";
    trainingOptionsList$[4] := "Under input file control - true go/no-go";
    trainingOptionsList$[5] := "Under input file control - cue image forced choice";
    
    fixationOptionsList$[0] := "Fixation:  None"; 
    fixationOptionsList$[1] := "Fixation:  Require Fixation"; 
    fixationOptionsList$[2] := "Fixation:  Require Fixation Until CC";
    'fixationOptionsList$[3] := "Fixation:  Allow Saccade Response";  'this was an intermediate step Evan decided was unnecessary
    fixationOptionsList$[3] := "Fixation:  Require Saccade Response";
    fixationOptionsList$[4] := "Fixation:  Monitor Eye Position Only";
    
    GetMainDialogParameters();
    'pack up two ints, we need the space
    twoInts%[0] := caReturnForReward%;
    twoInts%[1] := caStartTrial%;
    
	DlgCreate("Attention timing", 25, 10);
	DlgReal(caMainDlgAcquisitionTime%, "Acquisition time(s):", .01, 10);
    DlgReal(caMainDlgHoldFixationTime%, "Fixation Hold time(s):", .01, 10);
	DlgReal(caMainDlgITI%, "Intertrial time(s):", .01, 10);
    DlgReal(caMainDlgInterTrialTimeRand%, "Random ITI additional time(s):", 0, 10);
	DlgReal(caMainDlgAbortWait%, "Abort penalty time(s):", .01, 10);
    DlgReal(caMainDlgAbort2Wait%, "Abort penalty time post-CC(s):", .01, 10);
    DlgReal(caMainDlgFAPenalty%, "False Alarm penalty time(s):", .01, 100);  'I'll let that be really really long
    DlgReal(caMainDlgFAWindow%, "False Alarm check window(s): ", .01, 10);
    DlgReal(caMainDlgMissPenalty%, "Miss penalty time(s): ", 0, 100);
    'DlgReal(caMainDlgJoyRight%, "Joystick Right Threshold (V): ", 0, 3);
    DlgList(caMainDlgTrainingOptions%, 60, trainingOptionsList$[], nOpts%);
    DlgReal(caMainDlgTrainingHoldTime%, "Joystick Hold Time To Reward/Stimulus(s): ", .01, 10);
    DlgReal(caMainDlgFixAlternationTime%, "Fixation Point On/Off Time (training)(s): ", .01, 10);
    'DlgCheck(caMainDlgRequireFixation%, "Require Fixation",50);
    DlgList(caMainDlgRequireFixation%, 60, fixationOptionsList$[], 5);
    DlgReal(caMainDlgAdditionalWindowRadius%, "Additional Eye Window Radius (deg)",-10,10);
    DlgCheck(caMainDlgReturnForReward%, "Return for Reward",50);
    DlgInteger(caMainDlgStartTrial%, "Start Trial",1,caMaxTrl%);
    DlgReal(caMainDlgInitialDeadTime%, "Initial Dead Time (s): ", 0, 100);
    DlgCheck(caMainDlgRecordEEG%, "Record EEG - deprecaed");
    DlgString(caMainDlgEEGBaseName%, "EEG Base Name + Path",60,""); 
    DlgReal(caMainDlgSaccadeAnswerWindow%, "Saccade Answer Duration (s): ", 0, 100);
    DlgCheck(caMainDlgWithholdNoGoReward%, "Withhold No-Go Reward");
    
    
    
    caTextCallbackItemNumber% := DlgText("Text!",2,caMainDlgRequireFixation%+10,80);
    DlgButton(2, "Use Above Input File", UseInputFile%,2,caMainDlgRequireFixation%+11);
    DlgButton(3, "Select An Input File", OpenInputFile%,2,caMainDlgRequireFixation%+12);
    DlgButton(4, "Fixation Point Dialog", FixationPointDialog%,15,caMainDlgRequireFixation%+9);
    DlgButton(5, "Joystick Dialog", CallJoystickConfigDialog%,40,caMainDlgRequireFixation%+9);
    caTextCallbackItemNumber2% := DlgText("Text!",2,caMainDlgRequireFixation%+13,80);
    DlgButton(6, "Use Above NIC Template File", UseTemplateFile%,2,caMainDlgRequireFixation%+14);
    DlgButton(7, "Select A NIC Template File", OpenTemplateFile%,2,caMainDlgRequireFixation%+15);
    
    DlgAllow(0, 0, MainDialogChanged%);
    
    i% := DlgShow(caAcquisitionTime,caFixationTime,caInterTrialTime,caInterTrialTimeRand,caAbortWaitTime,caAbort2WaitTime,caFalseAlarmWaitTime,caFalseAlarmCheckWindow,caMissPenalty,caTrainingOptions%,
                  caTrainingHoldTime,caFixAlternationTime,caRequireFixation%,caAdditionalWindowRadius,twoInts%[],caInitialDeadTime,caRecordEEG%,EEGBaseName$,caAnswerWindowMin,caWithholdNoGoReward%);
    
    if i% = 1 then        
        
        tempAW := min(caAbortWaitTime,caAbort2WaitTime);
        if tempAW < caFalseAlarmCheckWindow then
            message("False Alarm Check Window is longer than shortest Abort Wait Time!");
            message("Reducing window to be equal to shortest Abort Wait Time!");
            caFalseAlarmCheckWindow := tempAW;
        endif;
        
        'unpack two ints
         caReturnForReward% := twoInts%[0];
         caStartTrial% := twoInts%[1];
        
        SaveMainDialogParameters();
        
        'Change value of caRequireFixation to -1 if it is 4 (monitor eye position only), because that's what the code expects.
        if caRequireFixation% = 4 then
            caRequireFixation% := -1;
        endif;
        
        'Change value of caRequireSaccadeResponse based on caRequireFixation result
        docase
        case caRequireFixation% = 3 and caTrainingOptions% > 2 then
            caRequireSaccadeResponse% := 1;
        else
            caAdditionalWindowRadius := 0;  'do not display additional stimulus window size if saccade response is not applicable, parameters have already been saved so if this was changed it will save in registry
        endcase;
        
        'If we only require fixation until contrast change, or if we allow/expect a saccade response
        if caRequireFixation% > 1 then
            caAllowFixationBreakAfterCC% := 1;  'allow break after CC
            caRequireFixation% := 1;  'set require fixation to 1 as expected
        else
            caAllowFixationBreakAfterCC% := 0;  'don't allow break after CC, will only do anything if fixation is otherwise required
        endif;
        
        
        'force fixation requirement to 0 (no) if scenario definitely doesn't use fixation
        'but don't do this if caRequireFixation is -1 (monitoring eyes only)
        if caTrainingOptions% < 2 and (caRequireFixation% = 1 or caRequireFixation% = 2) then
            caRequireFixation% := 0;
        endif;
        
        'we actually have to do this no matter what, because the default fixation dialog doesn't assign FixationColor$, but the Get function does
        GetFixationPointParameters();    'fills FixationX,FixationY,FixationColor$,FixationDiameter, WindowRadius
        return 1;
    else   
        Printlog("Main Dialog was cancelled!\n");
        return 0;
    endif;
    
    
end


func MainDialogChanged%(item%)
    var status% := 1;
    'for now we are ignoring item%, the only relevant question is whether an input file is open
    docase
    case DlgValue(caMainDlgTrainingOptions%) = 0 then
        DlgEnable(0,caMainDlgAcquisitionTime%);  'disable acquisition time
        DlgEnable(0,caMainDlgHoldFixationTime%);  'disable hold fixation time
        DlgEnable(0,caMainDlgAbortWait%);  'disable abort wait time
        DlgEnable(0,caMainDlgAbort2Wait%);  'disable abort2 wait time
        DlgEnable(0,caMainDlgFAPenalty%);  'disable FA penalty
        DlgEnable(0,caMainDlgFAWindow%);  'disable FA check window
        DlgEnable(0,caMainDlgMissPenalty%);  'disable miss penalty
        DlgEnable(0,caMainDlgTrainingHoldTime%);  'disable training hold time
        DlgEnable(0,caMainDlgFixAlternationTime%);  'disable fixation alternation time
        DlgEnable(0,caMainDlgRequireFixation%);  'disable require fixation check box
        DlgEnable(0,caMainDlgReturnForReward%);  'disable return for reward check box - can't return for reward here, it's immediate
        DlgEnable(0,caMainDlgStartTrial%);  'disable start trial for non-input-file scenarios
        DlgEnable(1,-1);  'enable "OK"
        DlgEnable(0,-2);  'disable using current input file
        DlgEnable(0,-3);  'disable loading input file
        DlgEnable(0,caTextCallbackItemNumber%);  'disable text display of control file
        DlgValue$(caTextCallbackItemNumber%,"Control File Not Applicable");
        DlgEnable(0,caMainDlgRecordEEG%);  'disable EEG Signals
        DlgValue$(caTextCallbackItemNumber2%,"Template File Not Applicable");
        DlgEnable(0,-6);  'disable using current template file
        DlgEnable(0,-7);  'disable loading template file
        DlgEnable(0,caMainDlgEEGBaseName%);  'disable EEG base name
    case DlgValue(caMainDlgTrainingOptions%) = 1 then
        DlgEnable(0,caMainDlgAcquisitionTime%);  'disable acquisition time
        DlgEnable(0,caMainDlgHoldFixationTime%);  'disable hold fixation time
        DlgEnable(0,caMainDlgAbortWait%);  'disable abort wait time
        DlgEnable(0,caMainDlgAbort2Wait%);  'disable abort2 wait time
        DlgEnable(0,caMainDlgFAPenalty%);  'disable FA penalty
        DlgEnable(0,caMainDlgFAWindow%);  'disable FA check window
        DlgEnable(0,caMainDlgMissPenalty%);  'disable miss penalty
        DlgEnable(0,caMainDlgFixAlternationTime%);  'disable fixation alternation time 
        DlgEnable(1,caMainDlgTrainingHoldTime%);  'enable training hold time   
        DlgEnable(0,caMainDlgRequireFixation%);  'disable require fixation check box
        DlgEnable(1,caMainDlgReturnForReward%);  'enable return for reward check box
        DlgEnable(0,caMainDlgStartTrial%);  'disable start trial for non-input-file scenarios
        DlgEnable(1,-1);  'enable "OK"
        DlgEnable(0,-2);  'disable using current input file
        DlgEnable(0,-3);  'disable loading input file
        DlgEnable(0,caTextCallbackItemNumber%);  'disable text display of control file
        DlgValue$(caTextCallbackItemNumber%,"Control File Not Applicable");
        DlgEnable(0,caMainDlgRecordEEG%);  'disable EEG Signals
        DlgValue$(caTextCallbackItemNumber2%,"Template File Not Applicable");
        DlgEnable(0,-6);  'disable using current template file
        DlgEnable(0,-7);  'disable loading template file
        DlgEnable(0,caMainDlgEEGBaseName%);  'disable EEG base name
    case DlgValue(caMainDlgTrainingOptions%) = 2 then
        if DlgValue(caMainDlgRequireFixation%) = 1 or DlgValue(caMainDlgRequireFixation%) = 2 or DlgValue(caMainDlgRequireFixation%) = 3 then
            DlgEnable(1,caMainDlgAcquisitionTime%);  'enable acquisition time
            DlgEnable(1,caMainDlgHoldFixationTime%);  'enable hold fixation time
        else
            DlgEnable(0,caMainDlgAcquisitionTime%);  'disable acquisition time
            DlgEnable(0,caMainDlgHoldFixationTime%);  'disable hold fixation time
        endif;
        DlgEnable(0,caMainDlgAbortWait%);  'disable abort wait time
        DlgEnable(0,caMainDlgAbort2Wait%);  'disable abort2 wait time
        DlgEnable(0,caMainDlgFAPenalty%);  'disable FA penalty
        DlgEnable(0,caMainDlgFAWindow%);  'disable FA check window
        DlgEnable(0,caMainDlgMissPenalty%);  'disable miss penalty
        DlgEnable(1,caMainDlgFixAlternationTime%);  'enable fixation alternation time 
        DlgEnable(1,caMainDlgTrainingHoldTime%);  'enable training hold time 
        DlgEnable(1,caMainDlgRequireFixation%);  'enable require fixation check box
        DlgEnable(1,caMainDlgReturnForReward%);  'enable return for reward check box
        DlgEnable(0,caMainDlgStartTrial%);  'disable start trial for non-input-file scenarios
        DlgEnable(1,-1);  'enable "OK"
        DlgEnable(0,-2);  'disable using current input file
        DlgEnable(0,-3);  'disable loading input file
        DlgEnable(0,caTextCallbackItemNumber%);  'disable text display of control file
        DlgValue$(caTextCallbackItemNumber%,"Control File Not Applicable");
        'note that the logic past training stage 3 (dlg value 2) hasn't been worked out yet because training details are not complete
        'but at least here's the framework for the final training stages    
        DlgEnable(1,caMainDlgRecordEEG%);  'enable EEG Signals
        if DlgValue(caMainDlgRecordEEG%) = 1 then
            DlgValue$(caTextCallbackItemNumber2%,"Template File: " + templateFileName$);
            DlgEnable(1,-6);  'enable using current template file
            DlgEnable(1,-7);  'enable loading template file
            DlgEnable(1,caMainDlgEEGBaseName%);  'enable EEG base name
            'don't allow user to press "OK" unless an input AND template file has been opened...but only do this if we are in a state where a template file is necessary
            if inputFileHandle% < 0 or templateFileHandle% < 0 then
                DlgEnable(0,-1);  'disable "OK"
            else
                DlgEnable(1,-1);  'enable "OK"
            endif;
        else
            DlgValue$(caTextCallbackItemNumber2%,"Template File Not Applicable");
            DlgEnable(0,-6);  'disable using current template file
            DlgEnable(0,-7);  'disable loading template file
            DlgEnable(0,caMainDlgEEGBaseName%);  'disable EEG base name
        endif;
        
    case DlgValue(caMainDlgTrainingOptions%) >= 3 then   'note that the logic here hasn't been fully worked out
        if DlgValue(caMainDlgRequireFixation%) = 1 or DlgValue(caMainDlgRequireFixation%) = 2 or DlgValue(caMainDlgRequireFixation%) = 3 then
            DlgEnable(1,caMainDlgAcquisitionTime%);  'enable acquisition time
            DlgEnable(1,caMainDlgHoldFixationTime%);  'enable hold fixation time
        else
            DlgEnable(0,caMainDlgAcquisitionTime%);  'disable acquisition time
            DlgEnable(0,caMainDlgHoldFixationTime%);  'disable hold fixation time
        endif;
        DlgEnable(1,caMainDlgAbortWait%);  'enable abort wait time
        DlgEnable(1,caMainDlgAbort2Wait%);  'enable abort2 wait time
        DlgEnable(1,caMainDlgFAPenalty%);  'enable FA penalty
        DlgEnable(1,caMainDlgFAWindow%);  'enable FA check window
        DlgEnable(1,caMainDlgMissPenalty%);  'enable miss penalty
        DlgEnable(0,caMainDlgFixAlternationTime%);  'disable fixation alternation time 
        if DlgValue(caMainDlgTrainingOptions%) = 3 and DlgValue(caMainDlgRequireFixation%) <> 3 then
            DlgEnable(1,caMainDlgTrainingHoldTime%);  'enable training hold time
        else
            DlgEnable(0,caMainDlgTrainingHoldTime%);  'disable training hold time
        endif;
        DlgEnable(1,caMainDlgRequireFixation%);  'enable require fixation check box
        DlgEnable(0,caMainDlgReturnForReward%);  'disable return for reward check box (here it should ALL be return for reward)
        DlgEnable(1,caMainDlgStartTrial%);  'enable start trial for input-file scenarios
        'furthermore...
        'don't allow user to press "OK" unless an input file has been opened...but only do this if we are in a state where an input file is necessary
        if inputFileHandle% < 0 then
            DlgEnable(0,-1);  'disable "OK"
        else
            DlgEnable(1,-1);  'enable "OK"
        endif;
        DlgEnable(1,-2);  'enable using current input file
        DlgEnable(1,-3);  'enable loading input file
        DlgEnable(1,caTextCallbackItemNumber%);  'enable text display of control file
        DlgValue$(caTextCallbackItemNumber%,"Control File: " + specFileName$);
        DlgEnable(1,caMainDlgRecordEEG%);  'enable EEG Signals 
        if DlgValue(caMainDlgRecordEEG%) = 1 then
            DlgValue$(caTextCallbackItemNumber2%,"Template File: " + templateFileName$);
            DlgEnable(1,-6);  'enable using current template file
            DlgEnable(1,-7);  'enable loading template file
            DlgEnable(1,caMainDlgEEGBaseName%);  'enable EEG base name
            'don't allow user to press "OK" unless an input AND template file has been opened...but only do this if we are in a state where a template file is necessary
            if inputFileHandle% < 0 or templateFileHandle% < 0 then
                DlgEnable(0,-1);  'disable "OK"
            else
                DlgEnable(1,-1);  'enable "OK"
            endif;
        else
            DlgValue$(caTextCallbackItemNumber2%,"Template File Not Applicable");
            DlgEnable(0,-6);  'disable using current template file
            DlgEnable(0,-7);  'disable loading template file
            DlgEnable(0,caMainDlgEEGBaseName%);  'disable EEG base name
        endif;
        
    endcase
    
    if DlgValue(caMainDlgRequireFixation%) = 3 or DlgValue(caMainDlgRequireFixation%) = 4 then
        DlgEnable(1,caMainDlgAdditionalWindowRadius%); 'enable additional radius entry
        DlgEnable(1,caMainDlgSaccadeAnswerWindow%); 'enable saccade answer window entry
    else
        DlgEnable(0,caMainDlgAdditionalWindowRadius%); 'disable additional radius entry
        DlgEnable(0,caMainDlgSaccadeAnswerWindow%); 'disable saccade answer window entry
    endif;
    
    'We have completely deprecated the Record EEG functions, because they were designed towards controlling
    'the NIC through Dan's UNIC program, and that program is no longer usable with the newest version of NIC.
    'I am not removing the code in case it is useful in the future, but anytime the DialogChanged function is
    'called, I'm just explicitly disabling these dialog entries/buttons.
    DlgEnable(0,caMainDlgRecordEEG%);  'disable EEG Signals
    DlgValue$(caTextCallbackItemNumber2%,"Template File Not Applicable");
    DlgEnable(0,-6);  'disable using current template file
    DlgEnable(0,-7);  'disable loading template file
    DlgEnable(0,caMainDlgEEGBaseName%);  'disable EEG base name
    
    
    return status%;
end



func UseInputFile%()
    'We need to do this, otherwise a second click on the button will make the OK button go gray and force a cancel (because subsequent FileOpen commands return negative)
    if caSpecFileOpen% = 1 then 'if a spec file is open, close it
        View(inputFileHandle%);
        FileClose();
        caSpecFileOpen% := 0;
    endif;
    inputFileHandle% := FileOpen(specFileName$,8,0);  'open a text file (8) for reading only (0), could specify directory to start in
    if inputFileHandle% >= 0 then
        caSpecFileOpen% := 1; 'keep track of fact that spec file has been opened
    else
        message("Failed to open input file!")
    endif
    MainDialogChanged%(-12345);   'doesn't matter what we pass it, just need to run it   
    return 1;  'We'll just assume the user didn't cancel - we could in principle use a DialogChanged function to gate the OK button on the main dialog, but c'mon
end;


func OpenInputFile%()
    'We need to do this, otherwise a second click on the button will make the OK button go gray and force a cancel (because subsequent FileOpen commands return negative)
    if caSpecFileOpen% = 1 then 'if a spec file is open, close it
        View(inputFileHandle%);
        FileClose();
        caSpecFileOpen% := 0;
    endif;
    inputFileHandle% := FileOpen("*",8,0,"Select New Input File");  'open a text file (8) for reading only (0), could specify directory to start in
    if inputFileHandle% >= 0 then
        caSpecFileOpen% := 1;  'keep track of fact that spec file has been opened
        view(inputFileHandle%);  'get the filename, we'll pass that to the VSG, use for display on the dialog
        specFileName$ := FileName$();  'This is the full path and filename
    else
        message("Failed to open input file!")
    endif
    MainDialogChanged%(-12345);   'doesn't matter what we pass it, just need to run it   
    return 1;  'We'll just assume the user didn't cancel - we could in principle use a DialogChanged function to gate the OK button on the main dialog, but c'mon
end;


func UseTemplateFile%()
    'We need to do this, otherwise a second click on the button will make the OK button go gray and force a cancel (because subsequent FileOpen commands return negative)
    if caTemplateFileOpen% = 1 then 'if a template file is open, close it
        View(templateFileHandle%);
        FileClose();
        caTemplateFileOpen% := 0;
    endif;
    templateFileHandle% := FileOpen(templateFileName$,8,0);  'open a text file (8) for reading only (0), could specify directory to start in
    if templateFileHandle% >= 0 then
        caTemplateFileOpen% := 1; 'keep track of fact that template file has been opened
    else
        message("Failed to open template file!")
    endif
    MainDialogChanged%(-12345);   'doesn't matter what we pass it, just need to run it   
    return 1;  'We'll just assume the user didn't cancel - we could in principle use a DialogChanged function to gate the OK button on the main dialog, but c'mon
end;


func OpenTemplateFile%()
    'We need to do this, otherwise a second click on the button will make the OK button go gray and force a cancel (because subsequent FileOpen commands return negative)
    if caTemplateFileOpen% = 1 then 'if a template file is open, close it
        View(templateFileHandle%);
        FileClose();
        caTemplateFileOpen% := 0;
    endif;
    templateFileHandle% := FileOpen("*",8,0,"Select New Template File");  'open a text file (8) for reading only (0), could specify directory to start in
    if templateFileHandle% >= 0 then
        caTemplateFileOpen% := 1;  'keep track of fact that template file has been opened
        view(templateFileHandle%);  'get the filename, we'll pass that to the VSG, use for display on the dialog
        templateFileName$ := FileName$();  'This is the full path and filename
    else
        message("Failed to open template file!")
    endif
    MainDialogChanged%(-12345);   'doesn't matter what we pass it, just need to run it   
    return 1;  'We'll just assume the user didn't cancel - we could in principle use a DialogChanged function to gate the OK button on the main dialog, but c'mon
end;




' Used to hard-quit from toolbar. This will close data files without saving!!! 
' It is important that this function be disabled once sampling is started!!!

func Quit%()
    'If the eyetracker is recording an output file, stop recording and close the file
    if RecordEyeTrackerOutputFile% = 1 then
        SafeSampleKey("w");  'Stop recording
        yield(0.1);
        SafeSampleKey("i");  'Close the file
        SafeSampleKey("Z");  'zero the DIGLOWs
    endif
    
	FileClose(-1,-1);
	return 0;
end;




''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc CreateSampleConfiguration()
    'In this function I am retaining the commented-out versions of the Plexon code from Henry's rig just in case
	var index;
    var key$;
    key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Temp\\Filepref";
    var primaryTxt$;
    var secondaryTxt$;
    SetPrimarySecondaryTxt(primaryTxt$,secondaryTxt$);
    SampleClear(); 'Set standard sampling state
    SampleChannels(64);  '32 does not work, we need more!
    
    FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 3);
    FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 1);
    DoSampleAutoName(key$,"ca","ca",primaryTxt$,secondaryTxt$);
    SampleAutoFile(1);  'Enable automatic file naming
    
	SampleAutoComment(0); 'Prompt for comment after sampling
	SampleAutoCommit(60); 'Seconds between each file commit
    
	'----Event Channel recording definitions----
    if caTrainingOptions% > 1 then   'don't create recording channels if just training, VSG not used
        SampleEvent(FrameTriggerChannel%,0,2,3600); 'Trigger channel, level
        SampleComment$(FrameTriggerChannel%,"Frame");
        SampleTitle$(FrameTriggerChannel%,"Frame");
        
        SampleEvent(FixationPointChannel%,2,2,3600); 'Trigger channel, level
        SampleComment$(FixationPointChannel%,"Fixation");
        SampleTitle$(FixationPointChannel%,"Fixation");
        
        SampleEvent(StimChangeChannel%,4,2,3600); 'Trigger channel, level
        SampleComment$(StimChangeChannel%,"Stim Chg.");
        SampleTitle$(StimChangeChannel%,"Stim Chg.");
        
        SampleEvent(ReadyChannel%,1,2,3600); 'Trigger channel, level
        SampleComment$(ReadyChannel%,"VSG Ready");
        SampleTitle$(ReadyChannel%,"VSG Ready");
    endif
    
    'Note that I'm just ALWAYS making a stim channel because otherwise I'd have to make some big changes to Stop% and I'd rather get this working
    SampleEvent(StimChannel%,3,2,3600); 'Trigger channel, level
    SampleComment$(StimChannel%,"Stim");
    SampleTitle$(StimChannel%,"Stim");
    
    
    '----Analog, non-spiking electrode recording conditions
    
    'Create joystick channel, but only if the joystick is actually present
    if caRequireSaccadeResponse% = 0 then  
        printlog("Joy channel is %d and joystick port is %d\n", JoyChannel%, GetJoystickPortX%());
        var ok%;
        ok%:=SampleWaveform(JoyChannel%, GetJoystickPortX%(), 1000);
        SampleTitle$(JoyChannel%, JoystickPortLabelX$);
    endif;
    if ok% < 0 then
        printlog("Error opening joystick channel: %s\n",Error$(ok%));
    endif;
    
    if UtilityPort% > -1 then
        SampleWaveform(UtilityChannel%,UtilityPort%,30000);        
        SampleTitle$(UtilityChannel%, UtilityPortLabel$);
    endif;
    
    'Create channels for EEG integration with unic server and Nic
    if caRecordEEG% = 1 then
        docase
        case UtilityPort% = unicFilePort% then
            Message("The utility port conflicts with the unicFilePort%, quitting!");
            halt
        case UtilityPort% = unicCommandSuccessPort% then
            Message("The utility port conflicts with the unicCommandSuccessPort%, quitting!");
            halt
        case UtilityPort% = unicStimulatingPort% then
            Message("The utility port conflicts with the unicStimulatingPort%, quitting!");
            halt
        endcase
        
        SampleEvent(unicFileChannel%,unicFilePort%,2,3600); 'Unic file changed channel, level
        SampleComment$(unicFileChannel%,"UnicFile");
        SampleTitle$(unicFileChannel%,"UnicFile");
        
        SampleEvent(unicCommandSuccessChannel%,unicCommandSuccessPort%,2,3600); 'Unic command returned success channel, level
        SampleComment$(unicCommandSuccessChannel%,"UnicSuccess");
        SampleTitle$(unicCommandSuccessChannel%,"UnicSuccess");
        
        SampleEvent(unicStimulatingChannel%,unicStimulatingPort%,2,3600); 'EEG stimulation channel, level
        SampleComment$(unicStimulatingChannel%,"EEGStimOn");
        SampleTitle$(unicStimulatingChannel%,"EEGStimOn");
    endif
    

    
    if caRequireFixation% <> 0 then  'don't set up eye channels unless we are looking at eye position
        'caRequireFixation% of -1 means watch fixation but don't require Looking%()
        ' Set up eye channels 
        'SampleWaveform(XChannel%,GetEyeXPort%(),1000);
        'SampleTitle$(XChannel%,EyeXPortLabel$);
        'SampleWaveform(YChannel%,GetEyeYPort%(),1000);
        'SampleTitle$(YChannel%,EyeYPortLabel$);
        if EyeXPort% > -1 then  'don't set up eye channels unless we are looking at eye position
            ' Set up eye X channel
            SampleWaveform(XChannel%,GetEyeXPort%(),1000);
            SampleTitle$(XChannel%,"Eye X");
        endif;
        
        if EyeYPort% > -1 then  'don't set up eye channels unless we are looking at eye position
            ' Set up eye Y channel 
            SampleWaveform(YChannel%,GetEyeYPort%(),1000);
            SampleTitle$(YChannel%,"Eye Y");
        endif;
        if EyeXPortPurkinje% > -1 then  'don't set up eye channels unless we are looking at eye position
            ' Set up eye X channel
            SampleWaveform(XChannelPurkinje%,GetEyeXPortPurkinje%(),1000);
            SampleTitle$(XChannelPurkinje%,"Eye X P");
        endif;
        
        if EyeYPortPurkinje% > -1 then  'don't set up eye channels unless we are looking at eye position
            ' Set up eye Y channel 
            SampleWaveform(YChannelPurkinje%,GetEyeYPortPurkinje%(),1000);
            SampleTitle$(YChannelPurkinje%,"Eye Y P");
        endif;
    endif;
    
    if PupilPort% > -1 then
        SampleWaveform(PupilChannel%,PupilPort%,1000);       
        SampleTitle$(PupilChannel%,PupilPortLabel$);
    endif;
    
    if PupilPortPurkinje% > -1 then
        SampleWaveform(PupilChannelPurkinje%,PupilPortPurkinje%,1000);       
        SampleTitle$(PupilChannelPurkinje%,PupilPortLabelPurkinje$);
    endif;
    
    
    '----Set up "spiking" Electrode Channels----
    GetElectrodeParameters();
    SetUpElectrodeConfiguration(caNumWavemarks%,ExcludedChans%[]);
    
    
    
    
	SampleTextMark(200);  'increase number of allowed characters, 1 is so stingy!
    
    
    'Set up digital marker channel, regardless of whether we are recording the eyetracker data file or not
    SampleDigMark(20);  '20 Hz should be plenty high for an expected sustained rate
    SampleTitle$(32,"Heartbeat");  '32 is the default digital marker channel
    
    
    if UseTwo1401s% = 1 then
        SampleEvent(TimingChannel%, 6, 2, 3600); 'Trigger channel, level
        SampleComment$(TimingChannel%,"Handshake");
        SampleTitle$(TimingChannel%,"Hndshk");
    endif;

    

	if UseTwo1401s% = 0 then
        SampleSequencer(script$ + "Tuning.pls");
    else
        SampleSequencer(script$ + "TuningSendTrigger.pls");
    endif;

    DoSampleOptimise();
	SampleMode(1); 'Continuous sampling
end;



proc InitializeWindows()
    
    var index%;
    var twopi;
    twopi := 2.0*4.0*ATan(1.0);
    
	'Open the data sampling window
	DataWindow% := FileNew(0,4);  'show spike shape setup dialog
    printlog("datawindow is %d\n",dataWindow%);
	Window(0,48,100,95);
	View(DataWindow%).WindowVisible(1);
    
    if caRequireFixation% <> 0 or caTrainingOptions% > 2 then
        
        'Open an XY view to display eye position
        XYWindow% := FileNew(12);
        iEyePosChannel% := 1;  'The primary eye position channel is #1
        XRange(-30,30);
        YRange(-2,-30,30);
        XYDrawMode(0,5,0);
        WindowVisible(1);
        Window(0, 0, 100, 47);
        XYColour(iEyePosChannel%,16);  'Make this channel red
        XYSize(iEyePosChannel%,-1);  'Only one point on this channel
        
        'Create a new channel in the XY view to show the ASL eye position
        iEyePosASLChannel% := XYSetChan(0);
        XYColour(iEyePosASLChannel%,8);  'Make this channel green
        XYSize(iEyePosASLChannel%,-1);  'Only one point on this channel
    
        'Create a new channel in the XY view to show the Purkinje eye position
        iEyePosPurkinjeChannel% := XYSetChan(0);
        XYColour(iEyePosPurkinjeChannel%,32);  'Make this channel purplekinje
        XYSize(iEyePosPurkinjeChannel%,-1);  'Only one point on this channel
        
    endif
    
    
    if caRequireFixation% <> 0 or caTrainingOptions% > 2 then  'don't set up eye windows unless we are looking at eye position, training step 3 or later
        'this will set up a window to display the fixpt, fixwindow, and monitor position if eyes are being tracked
        'OR for more advanced experiments regardless of eyetracking
        
        'Calcuate the fixation window
        for index% := 0 to 35 do
            FixWindowX[index%] := FixationX + WindowRadius * Cos(index% * twopi/36.0);
            FixWindowY[index%] := FixationY + WindowRadius * Sin(index% * twopi/36.0);
        next;
        
        'Create a new channel in the XY view to display the fixation window
        iFixationWindowChannel% := XYSetChan(0);
        XYColour(iFixationWindowChannel%,13);
        XYDrawMode(iFixationWindowChannel%,2,1);
        XYJoin(iFixationWindowChannel%,1);
        'Draw the fixation window
        XYAddData(iFixationWindowChannel%, FixWindowX[], FixWindowY[]);
        
        'Create a new channel in the XY view to display the fixation point
        iStimChannel% := XYSetChan(0);
        
        'Create a new channel in the XY view to show the monitor's location
        iMonitorChannel% := XYSetChan(0);
        XYColour(iMonitorChannel%,13);
        XYDrawMode(iMonitorChannel%,3,1);
        XYJoin(iMonitorChannel%,2);
        XYAddData(iMonitorChannel%,-9,-7);
        XYAddData(iMonitorChannel%,9,-7);
        XYAddData(iMonitorChannel%,9,7);
        XYAddData(iMonitorChannel%,-9,7);        
        
    endif;
    
    
    'Evan wants answer windows which tell him which stimulus will change, even though the eyes should remain at fixation 
    'This sets up answer window displays regardless of whether the eyes are being tracked    
    if caTrainingOptions% > 2 then
        'get locations of stimuli so that answer windows overlap them
        ParseGratingParametersBrief%(GetGratingParameters$("Stimulus"),mainX,mainY,mainW,mainH); 
        ParseGratingParametersBrief%(GetGratingParameters$("Distractor1"),dist1X,dist1Y,dist1W,dist1H);
        
        'change window radius, this will apply both to display window and answer window
        mainW := mainW + caAdditionalWindowRadius;
        mainH := mainH + caAdditionalWindowRadius;
        dist1W := dist1W + caAdditionalWindowRadius;
        dist1H := dist1H + caAdditionalWindowRadius;
        
        if mainW <= 0 or mainH <= 0 or dist1W <= 0 or dist1H <= 0 then
            message("One of the grating window sizes has been adjusted to be less than zero!  Quitting!");
            Quit%();
        endif;
        
        
        'Create new channels in the XY view to display the answer windows
        'reuse FixationX, FixationY
        'Main stimulus window
        for index% := 0 to 35 do
            FixWindowX[index%] := mainX + mainW * Cos(index% * twopi/36.0);
            FixWindowY[index%] := mainY + mainH * Sin(index% * twopi/36.0);
        next;
        iAnswerWindowChannelMain% := XYSetChan(0);
        XYColour(iAnswerWindowChannelMain%,13);
        XYDrawMode(iAnswerWindowChannelMain%,2,1);
        XYJoin(iAnswerWindowChannelMain%,1);
        'Draw the answer window
        XYAddData(iAnswerWindowChannelMain%, FixWindowX[], FixWindowY[]);
        
        
        'Distracter1 window
        for index% := 0 to 35 do
            FixWindowX[index%] := dist1X + dist1W * Cos(index% * twopi/36.0);
            FixWindowY[index%] := dist1Y + dist1H * Sin(index% * twopi/36.0);
        next;
        iAnswerWindowChannelDist1% := XYSetChan(0);
        XYColour(iAnswerWindowChannelDist1%,13);
        XYDrawMode(iAnswerWindowChannelDist1%,2,1);
        XYJoin(iAnswerWindowChannelDist1%,1);
        'Draw the answer window
        XYAddData(iAnswerWindowChannelDist1%, FixWindowX[], FixWindowY[]);
                
        
    endif;
    
    
end;




'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' InitializeToolbar - prepare toolbar buttons. Note that the idle processing function (ToolbarSet(0, blah, blah)) is 
' not set here. That's done when the user hits the start button.
'
proc InitializeToolbar()
    
    
	View(App(8)).WindowVisible(0);	'Hide the standard sample bar
	ToolbarVisible(1);
	UpdateToolbarText();
    if UseTwo1401s% = 1 then
        ToolbarSet(1,"StartPlexon",StartPlexon%);
    else
        ToolbarSet(1,"Sample start",Start%);
    endif;
	ToolbarSet(2,"Sample stop", Stop%);
	ToolbarSet(3,"Pause stimuli",PauseStimuli%);  'updated all ToolbarEnable commands
	ToolbarSet(4,"Resume stimuli",ResumeStimuli%);  'updated all ToolbarEnable commands
    ToolbarSet(5,"Juice", Reward%);  'moved from 3 to 5 because Stacey was accidentally clicking Sample Stop sometimes, there are no ToolbarEnable commands for juice, it is always enabled
    ToolbarSet(6,"Adjust Joystick",CallJoystickConfigDialog%);
	ToolbarSet(7,"Quit",Quit%);
    ToolbarSet(8,"Optimize Y",OptimizeY%);
	ToolbarEnable(2,0);
	ToolbarEnable(3,0);  
	ToolbarEnable(4,0); 
    ToolbarEnable(8,0);     
	Toolbar("Go",0x3ff);
    
end;





''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Start%()
	var CommandLine$;
	var Extras$;
    var FixationArg$;
	var Stim$:="";
    var stimSpec$;
    var dist1Spec$;
    var Opener$;
    var startSecs := 5;
    var pulseFound%;
    var tRise;
    var tFall;
    
    
    
    'leaving in Plexon-specific code in commented form just in case
	
    'hard code pReward to 1, keep it this way for Evan unless he asks
    pReward := 1;
    
    'and set the start trial based on the user's requested start trial (will probably be 1 most of the time, correct for zero-indexing)
    caCurrTrialIndex% := caStartTrial%-1;
    
    
    'start sampling
    if UseTwo1401s% = 1 then
        SampleStart(0);  'Set sampling to start immediately
        Yield(0.5);  'Wait half a second
        'Look for handshake, unless disabled
        while pulseFound% < 1 and startSecs > 0 and Dual1401IgnoreHandshake% = 0 do
            pulseFound% := View(DataWindow%).FindPulseUp%(TimingChannel%, 0, tRise, tFall);
            yield(0.1);
            startSecs := startSecs - 0.1;
        wend
        'Send timing pulse
        SampleSeqVar(11,20);  'set for 20 ms pulse (Was not specified!  Two 1401s has been inactive for years and "T" may have been accidentally co-opted?)
        SafeSampleKey("T");     
    else
        SampleStart(0); 'Start sampling now
    endif;
    
    if startSecs <= 0 then
        message("Handshake not found in 5 seconds!  Quitting!");
        halt
    endif

    
	' Set Sequencer Variable #3 based on juicer type 
    SetJuicerSequencerVariable%();
    ' Clear any trigger bits on digout lines.
    SafeSampleKey("0");  'this is DIGOUT
    SafeSampleKey("Z");  'this is DIGLOW
    
    'Change offset of joystick channel
    'View(DataWindow%).ChanOffset(JoyChannel%,-2.386);  'try this value, looks pretty good
    View(DataWindow%).ChanOffset(JoyChannel%,joystickOffsetX);  'use value from registry
    
    'Set value of right/left joystick
    GetJoystickParameters();  'now we run the joystick functions from Sperka, should work smoothly
    DisplayJoystickParametersX();
'    jsRightLow := caJoyRight;  'Just set this brute force from the dialog box
'    jsCenterHigh := caJoyRight;
'    jsLeftHigh := -caJoyRight;  'And set this to the same value - this will probably not be great due to the nonlinearity of the joystick.
'    jsCenterLow := -caJoyRight;
    
    'set YRange for JoyChannel, XRange for everything
    View(DataWindow%).XRange(-1,8);  'I think this will set the x-axis to scroll, with an 8-second width 
    'View(DataWindow%).YRange(JoyChannel%,-0.75,0.75);  'HAVE TO USE VIEW(DATAWINDOW).YRANGE, NOT YRANGE.  UGH.
    View(DataWindow%).YRange(JoyChannel%,0,1);
    
    'get all these grating parameters
    stimSpec$ := GetGratingParameters$("Stimulus");
    dist1Spec$ := GetGratingParameters$("Distractor1");
    
    
    
    'Create stim, there are always two stimuli in this scenario
	Stim$ := " -s " + stimSpec$ + " -s " + dist1Spec$;  
    
    
	'CreateContrastList(Contrast$,attContrastList%,attChangeList%,attValidList%,attAttendList%,attHazardList,attOffBitsList%,attRotationList%,attFixColor%);  'Fills Contrast$ with the big ol' list, plus some vars to make it easier on us all   
    Extras$ := " -b " + caBackgroundColor$ + " -p 2 -d " + GetDistanceToScreenMM$(); '+ " -N ";' + lolSpec$;  'answer points off, lollipop spec off as well

    
    'set fixation argument
    FixationArg$ := " -f " + str$(FixationX) + "," + str$(FixationY) + "," + str$(FixationDiameter) + "," + FixationColor$;
    'this line is just the explicit action of the function below!
	
    'Get the fixation point parameters, these are put directly into FixationArg$
    'GetFixationPointParameters();  

    
    ' djs Construct beginning of command line, up to the program arguments. 
    Opener$ := "cmd /k " + GetBinDir$(1) + "fixstim.exe ";
    if GetUseRemoteStimulus%() = 1 then
        Opener$ := "cmd /c " + GetBinDir$(1) + "remote.exe " + GetRemoteStimulusIP$() + " " + GetRemoteStimulusPort$() + " fixstim ";
    endif
    
    
    
    
    
    'Create command line, will be different for different training options
    docase
    case caTrainingOptions% < 2 then
        CommandLine$ := "There is no command line for training options 1 and 2!";  'don't worry, we won't try to use this
    case caTrainingOptions% = 2 then
        '        CommandLine$ := "cmd /k " + bin$ + "\\fixstim.exe " + FixationArg$ + Extras$ + Stim$ + " -O 0,90,180,270,360"; 'There's a fake tuning curve here, because Fixstim.exe wants one
        CommandLine$ := Opener$ + FixationArg$ + Extras$ + Stim$ + " -O 0,90,180,270,360"; 'There's a fake tuning curve here, because Fixstim.exe wants one
    case caTrainingOptions% > 2 then
        'This command line is not yet tested, but looks to be about right
        'CommandLine$ := "cmd /k " + bin$ + "\\fixstim -F " + FixationArg$ + Extras$ + Stim$ + " -W " + specFileName$;  'Here we need the spec file name
        'CommandLine$ := "cmd /k " + bin$ + "\\fixstim " + FixationArg$ + Extras$ + Stim$ + " -W " + specFileName$;  'Here we need the spec file name
        
        ' djs 1-26-16
        ' Modify command line below when user wants EEG signals sent from the VSG app. The extra stuff is appended to the filename argument
        ' given with "-W". The extra argument is an ip address and a port number. When the EEG is on the local machine, the ip is 
        ' 127.0.0.1. The port number is always 1234. 
        
        CommandLine$ := Opener$ + FixationArg$ + Extras$ + Stim$ + " -W " + specFileName$;  'Here we need the spec file name
        if caRecordEEG% = 1 then
            CommandLine$ += ",127.0.0.1:1234";
        endif
        
        'message(CommandLine$);
        'printlog("Command line is %s\n", CommandLine$);
        'Quit%();
    endcase
    
    
    'Note that command line for fixation only (caTrainingOptions% = 2) will be different - actually, no, probably not.  
    'We'll just only toggle the fixpt and nothing else in the idle loop for fixation only. 
    
	'Begin the stimulus program. It will take a few seconds for the VSG to initialize.
	
    if caTrainingOptions% >= 2 then  'don't start VSG program unless we need it, stage 3 or later (training options starts at 0)
        PrintLog(CommandLine$+"\n");
        StimHandle% := ProgRun(CommandLine$,1);
        if StimHandle% <0 then 
            Message("Could not start stimulus."); 
            halt; 
        endif
        iState% := stateVSGWait%;  'set initial state for the idle loop
    else
        iState% := stateWaitForJoystickInCenter%;  'set initial state for the idle loop
	endif;
    
    'If we are asking the eyetracker to record an output file, open the file and start recording
    if RecordEyeTrackerOutputFile% = 1 then
        SafeSampleKey("I");  'Open the file (this is done by setting a DIGLOW bit), file name will be saved in a sampletext
        yield(0.5);
        SafeSampleKey("W");  'Begin recording the file
        yield(0.5);
    endif
    
	
	ToolbarSet(0,"",IdleProcessing%);	'Enable the IdleProcessing function
	ToolbarEnable(2,1);  'enable sample stop
	ToolbarEnable(1,0);  'disable sample start
	'ToolbarEnable(6,0);  'this button is not used
	ToolbarEnable(7,0);  'disable Quit
    ToolbarEnable(8,1);  'enable optimize y
	View(DataWindow%);
	Yield(.1);
    return 1;
end;



func StartPlexon%()
           var fp$;  'to hold current file path
           fp$ := SetPathToScriptDirectory$();
           CreateSampleConfiguration();    
    
           StartSecondInstanceOfSpike2();
       
           FilePathSet(fp$);  'change the file path back to what it was
           fp$ := FilePath$();  'read out to allow verification
           printlog("%s\n",fp$); 'and tell the world to verify
    
           ToolbarSet(1,"Start SECOND",Start%);  'change button 1 on the toolbar, this may not work
    
           ' Get display windows ready
           InitializeWindows();    
    
           return 1; 'stay in toolbar    
    
end




''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Stop%()
    var i%, j%, mylen%;
    var fn$;
    var chanToExport%[50];
    var totalChanToExport%;
    
	' Disable idle process func
	ToolbarSet(0,"");  
    
    'If the eyetracker is recording an output file, stop recording and close the file
    if RecordEyeTrackerOutputFile% = 1 then
        SafeSampleKey("w");  'Stop recording
        yield(0.1);
        SafeSampleKey("i");  'Close the file
        SafeSampleKey("Z");  'zero the DIGLOWs
    endif
    
    
    'Allow quit, but do not do this before the eyetracker file is closed, just in case
    ToolbarEnable(7,1);
    
    ToolbarEnable(8,0);  'disable optimize y (don't really need to because we don't close the dataWindow, but may as well...)
    
    
    
    'Abort stimulation if it may still be running, or stop recording if it may be recording without a template
    View(DataWindow%).NextTime(unicStimulatingChannel%, tLastTemplateTime, vTrigger);
    if vTrigger = 0 then 'stimulation is still running!
        unicSendAbortStimulation%();
    else
        if caEEGIsRecording% = 1 then
            unicSendStopEEG%();
        endif;
    endif;

    'Unload template, if it may still be loaded
    if caTemplateIsLoaded% = 1 then
        unicSendUnloadTemplate%();
    endif;
    
    
    
	' Tell stim app to shut down
	SafeSampleKey("Q");
	Yield(.1);
	SampleStop();
    
	ProgKill(StimHandle%);
	while ProgStatus(StimHandle%) > 0 do
		Yield();
	wend
    
    View(DataWindow%);
    ExportChanList(); 
    chanToExport%[1] := 30;  'channels to export go in elements 1:...'30 is the textmark channel
    chanToExport%[2] := 31;  '31 is the keyboard channel
    chanToExport%[3] := 32;  '32 is the digital marker channel
    chanToExport%[4] := StimChannel%;  'stim channel
    totalChanToExport% := 4;  'so far, four hardcoded channels to export
    
    
    'Note that this commented section does NOT include an update to use the "totalChanToExport%" syntax and may no longer work as-is
    '    docase
    '    case UsePlexon18WM24WF% = 1 then  'use hardcoded Plexon values - 18 WaveMarks and 24 LFPs for now, on the micro it's 
    '        for i% := 0 to 12 do
    '            chanToExport%[i%+4] := i%+1;  'wavemark channels are in order
    '        next;
    '        chanToExport%[0] := 3+i%;  'total number of channels goes in element 0
    '    case UsePlexon7WM15CN% = 1 then  'use hardcoded Plexon values - 7 WaveMarks and 15 LFPs
    '        for i% := 0 to 13 do
    '            chanToExport%[i%+4] := i%+1;  'wavemark channels are in order
    '        next;
    '        for i% := 14 to 21 do
    '            chanToExport%[i%+4] := i%+3;  'wavemark channels are in order, but we're skipping eye channels
    '        next;
    '        chanToExport%[0] := 3+i%;  'total number of channels goes in element 0
    '    else
    '    endcase;
    
    for i% := 0 to NumWavemarkPorts%-1 do  'will not run if NumWavemarkPorts% is 0
        totalChanToExport% += 1;  'increment number of channels to export
        'chanToExport%[i%+4] := i%+1;  'wavemark channels are in order
        chanToExport%[totalChanToExport%] := i%+1;  'wavemark channels are in order
    next;
    
    for j% := 0 to NumContinuousPorts%-1 do  'will not run if NumWavemarkPorts% is 0
        totalChanToExport% += 1;  'increment number of channels to export
        'chanToExport%[i%+j%+4] := j%+NumWavemarkPorts%+1;  'wavemark channels are in order
        chanToExport%[totalChanToExport%] := j%+NumWavemarkPorts%+1;  'wavemark channels are in order
    next;
    
    
        'Code for putting other various channels into the Matlab extraction, Ben doesn't want them but they will be useful for other code    
    if caRequireFixation% <> 0 then  'eye position channel only if used
        'ExportChanList(0,view(datawindow%).maxtime(),XChannel%);  'Eye position channel, X
        'ExportChanList(0,view(datawindow%).maxtime(),YChannel%);  'Eye position channel, Y
        if EyeXPort% > -1 then 
            totalChanToExport% += 1;
            chanToExport%[totalChanToExport%] := XChannel%;
        endif
        if EyeYPort% > -1 then
            totalChanToExport% += 1;
            chanToExport%[totalChanToExport%] := YChannel%;
        endif
        if EyeXPortPurkinje% > -1 then 
            totalChanToExport% += 1;
            chanToExport%[totalChanToExport%] := XChannelPurkinje%;
        endif
        if EyeYPortPurkinje% > -1 then
            totalChanToExport% += 1;
            chanToExport%[totalChanToExport%] := YChannelPurkinje%;
        endif
    endif;
    if caRequireSaccadeResponse% = 0 then 
        totalChanToExport% += 1;
        chanToExport%[totalChanToExport%] := JoyChannel%;  'Joystick Channel if it exists
        'ExportChanList(0,view(datawindow%).maxtime(),JoyChannel%);  'Joystick Channel if it exists
    endif;
    
    'The first element in the chanToExport% variable must be the number of channels to be exported
    'chanToExport%[0] := 3+i%+j%;  'total number of channels goes in element 0    
    chanToExport%[0] := totalChanToExport%;
    
    'Update list of channels to export in one fell swoop
    ExportChanList(0,view(datawindow%).maxtime(),chanToExport%[]);
    

    
    
    
    'Old version, causes a double-period in Spike2 v.8 because of new four-letter extension
'    fn$ := FileName$();  'get current file name
'    printlog("file name is %s\n",fn$);
'    mylen% := Len(fn$);
'    fn$ := Left$(fn$,mylen%-4);
'    if Right$(fn$,1) = "." then  'if the file is an .smrx, we need to adjust further
'        fn$ := Left$(fn$,Len(fn$)-1);
'    endif;
'    fn$ := fn$ + ".mat";
    
    'New version, should work on all Spike2 versions
    fn$ := FileName$(1) + FileName$(2) + FileName$(3) + FileName$(4);
    fn$ := fn$ + ".mat";
    printlog("Matlab output file name is %s\n",fn$);
    
    
    FileSaveAs(fn$,100,0,"",0,"UseSName=0"); 'Do not overwrite the .mat file - should have a different name and if it doesn't that is a red flag    
    
    ' Write parameter file
	WriteParameterFile();
    
    '    if UseTwo1401s% = 1 then
    '        ' Save most recent .s2r file name to registry
    '        fn$ := Left$(fn$,mylen%-4);
    '        if Right$(fn$,1) = "." then  'if the file is an .smrx, we need to adjust further
    '            fn$ := Left$(fn$,Len(fn$)-1);
    '        endif;
    '        fn$ := fn$ + ".s2r";
    '        var key$;
    '        key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Scripts\\AttentionGNG";
    '        SetStringRegistryValue(key$, "microS2Rfile", fn$);
    '        printlog("S2R file name %s was saved to registry\n",fn$);
    '    endif;
    
    
    
end;


func IdleProcessing%()
    'var getPreciseTiming := 1;
	var iStatus% := 1;	
    var tempanswer%;
    var temptext$;
    var nextStateImmed% := 1;
    var tempReturn%;
    
    
    'The trick here is that sometimes sampling isn't caught up on all channels.  MaxTime() may return a lower
    'value than MaxTime(ChanN%). When we find a trigger and try to place a TextMark, SampleText will do an internal
    'call to MaxTime() - no channel # - to determine whether to place it at the requested time or at MaxTime().
    'In some instances, this has resulted in the TextMark being placed earlier than the event which caused it.
    'We are now explicitly checking for this - if we find it, we have to avoid updating tLast and continue checking
    'in order to not miss the trigger AND to put the TextMark at the right time.
    'Note that we will ONLY do the additional check in instances where a timed TextMark is being placed at the 
    'time of the trigger.
    
    'There are now only TWO locations where the stimulus advance can occur.  The standard one is in stateTrialCompleted%
    'which advances obligatorily.  The other is in stateAbortWait%, which is only advanced when advanceOnAbort% is set.
    'I believe that all routes go through one of these two states, and exactly one of these states.
    
    while nextStateImmed% = 1 do
        nextStateImmed% := 0;  'don't run immediately again unless we ask    
        tNow := View(DataWindow%).MaxTime();
        
        'only check eye position if we are in a training/standard condition that has eye channels
        if caRequireFixation% <> 0 then
            
            'get eye position, but don't check if tNow is small enough that we would give a negative value to ChanMeasure
            if tNow > .006 then
                GetAllFixationPosition(DataWindow%,XChannel%,YChannel%,XChannelPurkinje%,YChannelPurkinje%,tNow);
'                docase
'                case UseASLEyetracker% = 1 and UsePurkinjeEyetracker% = 1 then  'Crazy!  We should average them if both eyetrackers are present and the config says to use both
'                    xEye := ((View(DataWindow%).ChanMeasure(XChannel%,2,tNow-.006,tNow-.001)*DegreesPerVoltX) + (View(DataWindow%).ChanMeasure(XChannelPurkinje%,2,tNow-.006,tNow-.001)*DegreesPerVoltXPurkinje))/2;
'                    yEye := ((View(DataWindow%).ChanMeasure(YChannel%,2,tNow-.006,tNow-.001)*DegreesPerVoltY) + (View(DataWindow%).ChanMeasure(YChannelPurkinje%,2,tNow-.006,tNow-.001)*DegreesPerVoltYPurkinje))/2;
'                case UseASLEyetracker% = 1 then
'                    xEye := View(DataWindow%).ChanMeasure(XChannel%,2,tNow-.006,tNow-.001)*DegreesPerVoltX;
'                    yEye := View(DataWindow%).ChanMeasure(YChannel%,2,tNow-.006,tNow-.001)*DegreesPerVoltY;
'                case UsePurkinjeEyetracker% = 1 then
'                    xEye := View(DataWindow%).ChanMeasure(XChannelPurkinje%,2,tNow-.006,tNow-.001)*DegreesPerVoltXPurkinje;
'                    yEye := View(DataWindow%).ChanMeasure(YChannelPurkinje%,2,tNow-.006,tNow-.001)*DegreesPerVoltYPurkinje;
'                else  'No eyetracker to use!
'                    xEye := 0;
'                    yEye := 0;
'                endcase
            endif;
            
            ' Don't update eye position display every time....
            if tNow-tLastUpdate > .005 then
                UpdateFixationDisplay(XYWindow%);
                'View(XYWindow%).XYAddData(1,xEye,yEye);
                tLastUpdate := tNow;
            endif
        endif
        
        
        
        docase 
        case iState% = stateVSGWait% then
            
            ' Waiting for VSG to indicate it is ready. The indication is a pulse (up, then down, 1 frame apart) on port 6.
            tTrigger := View(DataWindow%).NextTime(ReadyChannel%, tLastTrigger, vTrigger);
            if tTrigger > tLastTrigger and vTrigger = 0 then
                PrintLog("state stateVSGWait: Got leading edge of trigger\n");
                tLastTrigger := tTrigger;
                joystickHasBeenCentered% := 1;  'allow animal to press right at any time
                ChangeStateTo(stateVSGWaitConfirm%, tTrigger);
                if caTrainingOptions% > 2 then 'get initial locations of fixpt/stimuli
                    UpdateOnScreenPositions();  
                endif;
            endif;
            
        case iState% = stateVSGWaitConfirm% then
            
            ' Waiting for VSG to confirm it is ready. The downward side of the pulse is expected...
            tTrigger := View(DataWindow%).NextTime(ReadyChannel%, tLastTrigger, vTrigger);
            if tTrigger > tLastTrigger and vTrigger = 1 then
                PrintLog("state stateVSGWaitConfirm: Got trailing edge of trigger\n");
                tLastTrigger := tTrigger;
                'once VSG has confirmed, initialize 
                if caRecordEEG% = 1 then
                    tempReturn% := unicInitialize%("d:\\work\\dev\\test.txt", "127.0.0.1:1235");  'location of file is hardcoded
                    if tempReturn% = 1 then
                        tempReturn% := unicRequestDummyPulse%();
                        docase
                        case tempReturn% = -1 then 'this would indicate that unicInitialize did not succeed, should not happen
                            message("Coding error!  This should never happen!  Quitting!");  
                            Quit%();
                        case tempReturn% = -2 then
                            message("Could not open command file!  Since command file just opened a few ms ago, this is weird.  Quitting!");
                            Quit%();
                        else 'success in requesting dummy pulse
                            ChangeStateTo(stateUnicInitWait%, tTrigger);
                        endcase
                    else
                        message("The Unic server did not successfully launch!  Quitting!");
                        Quit%();
                    endif;
                else
                    ChangeStateTo(stateInitialDeadTime%, tTrigger);
                endif;
            endif;
            
            
        case iState% = stateUnicInitWait% then
            
            ' Waiting for Unic to indicate it is ready. The indication is a pulse (up, then down, 1 frame apart) on port 6.
            tTrigger := View(DataWindow%).NextTime(unicFileChannel%, tLastTrigger, vTrigger);
            if tTrigger > tLastTrigger and vTrigger = 0 then
                PrintLog("state stateUnicInitWait: Got leading edge of trigger\n");
                tLastTrigger := tTrigger;
                ChangeStateTo(stateUnicInitWaitConfirm%, tTrigger);
            endif;
            
            
        case iState% = stateUnicInitWaitConfirm% then
            
            ' Waiting for Unic to confirm it is ready. The downward side of the pulse is expected...
            tTrigger := View(DataWindow%).NextTime(unicFileChannel%, tLastTrigger, vTrigger);
            if tTrigger > tLastTrigger and vTrigger = 1 then
                PrintLog("state stateUnicInitWaitConfirm: Got trailing edge of trigger\n");
                tLastTrigger := tTrigger;
                ChangeStateTo(stateUnicPreInitialDeadTime%, tTrigger);
            endif;
            
            
       case iState% = stateUnicPreInitialDeadTime% then
            
            ' By default, if we are doing EEG, we should start recording during the dead period
            unicSendStartEEG%(EEGBaseName$,trialCount8bit1%,trialCount8bit2%); 'start recording
            SampleText("Dead Time Recording: " + Str$(trialCount8bit1%) + "," + Str$(trialCount8bit2%),tNow);
            Increment8bitTrialCount();
            caEEGIsRecording% := 1;
            CheckUnicChangeStateTo(stateInitialDeadTime%,tNow);  'check for recording start and move to dead time            
    
            
            
        case iState% = stateInitialDeadTime% then
            'waiting through an initial dead period that Evan wants before the first stimulus
            if tNow > caInitialDeadTime then  'was tNow - tStateStart, but dead time can easily go from start of recording, makes Unic Server check easier
                'Give pattern of four pulses - this is the initializing pattern for both the NIC EEG file and the eyetracker file
                SafeSampleKey("1");
                yield(0.2);
                SafeSampleKey("1");
                yield(0.2);
                SafeSampleKey("1");
                yield(0.2);
                SafeSampleKey("1");
                tNow := View(DataWindow%).MaxTime();  'update tNow, because we've paused a lot here
                if caRequireSaccadeResponse% = 1 then
                    'if we require a saccade response, skip the joystick centering step, joystick will not be used
                    if caEEGIsRecording% = 1 then
                        unicSendStopEEG%();
                        caEEGIsRecording% := 0;
                        CheckUnicChangeStateTo(stateStartTrial%,tNow);  'check for recording stop and move to start trial
                    else
                        ChangeStateTo(stateStartTrial%, tNow);
                    endif;
                    nextStateImmed% := 1;
                    SampleText("Dead Time Over",tNow);
                else
                    if caRecordEEG% = 1 then
                        unicSendStopEEG%();
                        CheckUnicChangeStateTo(stateCheckForTemplateAdvance%,tNow);  'check for recording stop and move to checking for template advance
                    else
                        ChangeStateTo(stateCheckForTemplateAdvance%, tNow);
                    endif;
                    nextStateImmed% := 1;
                    SampleText("Dead Time Over",tNow);
                endif;
                
            endif;
            

            
        case iState% = stateCheckForTemplateAdvance% then  'Check to see if it is time to start a template
            
            'check to see if we need to load/start a template, or start EEG, if recording EEG
            if caRecordEEG% = 1 and tNow > tLastTemplateTime + tThisTemplateDuration then
                
                'if a template is currently loaded, check to make sure stimulation is stopped, then unload the template
                docase
                case caTemplateIsLoaded% = 1 then
                    ChangeStateTo(stateUnloadTemplate%,tNow);
                case caEEGIsRecording% = 1 then
                    ChangeStateTo(stateStopEEGRecording%,tNow);
                else
                    ChangeStateTo(stateDetermineNextTemplate%,tNow);
                endcase
          
            else 'if we don't need to mess with the template, just go straight to the next step
                if caRequireSaccadeResponse% = 1 then
                    ChangeStateTo(stateStartTrial%,tNow);  'which is start the trial, if saccade response
                else
                    ChangeStateTo(stateWaitForJoystickInCenter%, tNow);  'or center the joystick, if joystick response
                endif;
                nextStateImmed% := 1;  'go straight to it
            endif;
            
                
        case iState% = stateUnloadTemplate% then
            ' Wait for Unic to confirm stop of stimulation. The downward side of the pulse is expected...
            tTrigger := View(DataWindow%).NextTime(unicStimulatingChannel%, tLastTemplateTime, vTrigger);
            if tTrigger > tLastTemplateTime and vTrigger = 1 then
                PrintLog("state stateUnloadTemplate: Confirmed Stimulation is complete\n");
                unicSendUnloadTemplate%();
                CheckUnicChangeStateTo(stateStopEEGRecording%,tNow);  'check for template unload success and go to stop recording 
                caTemplateIsLoaded% := 0;  'Note no template is loaded
                nextStateImmed% := 1;  'come back ASAP
            endif; 
            
            
            
        case iState% = stateStopEEGRecording% then
            'if recording is curently ongoing, stop recording
            if caEEGIsRecording% = 1 then
                unicSendStopEEG%();
                CheckUnicChangeStateTo(stateDetermineNextTemplate%,tNow);  'check for recording stop and figure out the next template
                caEEGIsRecording% := 0;  'Note recording is stopped
                nextStateImmed% := 1;  'come back ASAP
            endif;
            
            
        case iState% = stateDetermineNextTemplate% then
            'caCurrTemplate% will start at 0, perfect for indexing, increment after this step
            if caCurrTemplate% <= caNumberOfTemplates%-1 then 'if there is at least one more template
                tThisTemplateDuration := caTemplateDur[caCurrTemplate%];
                if caTemplateLoc$[caCurrTemplate%] = "gap" then
                    ChangeStateTo(stateStartEEG%,tNow);  'do not load a template if we are using a gap
                else
                    ChangeStateTo(stateLoadTemplate%,tNow);  'load template
                endif;   
                nextStateImmed% := 1;  'go straight to it
            else 'if we are out of new templates, skip ahead, the trials will continue according to Evan
                if caRequireSaccadeResponse% = 1 then
                    ChangeStateTo(stateStartTrial%,tNow);  'which is start the trial, if saccade response
                else
                    ChangeStateTo(stateWaitForJoystickInCenter%, tNow);  'or center the joystick, if joystick response
                endif;
                nextStateImmed% := 1;  'go straight to it
                tThisTemplateDuration := 99999999;  'this will ensure future iterations go straight to the next trial
            endif;            
            
            
        case iState% = stateLoadTemplate% then
            unicSendLoadTemplate%(caTemplateLoc$[caCurrTemplate%]);
            caTemplateIsLoaded% := 1;
            CheckUnicChangeStateTo(stateStartEEG%,tNow);  'check for template load
            
            

        case iState% = stateStartEEG% then
            if caTemplateIsLoaded% = 1 then
                unicSendStartStimulation%(); 'start stimulation
            else
                unicSendStartEEG%(EEGBaseName$,trialCount8bit1%,trialCount8bit2%); 'start recording
            endif;
            if caRequireSaccadeResponse% = 1 then
                tempState% := stateStartTrial%;  'next would be start the trial, if saccade response
            else
                tempState% := stateWaitForJoystickInCenter%;  'or center the joystick, if joystick response
            endif;
            CheckUnicChangeStateTo(tempState%,tNow);  'check for template load
            if caTemplateIsLoaded% = 1 then
                SampleText("Template (" + caTemplateLoc$[caCurrTemplate%] + ") Recording Begins: " + Str$(trialCount8bit1%) + "," + Str$(trialCount8bit2%),tLastTemplateTime);
            else
                SampleText("Gap Recording Begins: " + Str$(trialCount8bit1%) + "," + Str$(trialCount8bit2%),tLastTemplateTime);
            endif;
            Increment8bitTrialCount();  'increment the trial counter
            caEEGIsRecording% := 1;  'note recording is started
            caCurrTemplate% += 1;  'finally, increment the current template number
            
            
        case iState% = stateWaitForJoystickInCenter% then
            'check to see if it is OK to go straight to checking for the joystick in the right -
            'do this if joystick has just been centered and the scenario is one where the trial does not start until joystick is in the right
            if joystickHasBeenCentered% and (caTrainingOptions% < 2 or (caTrainingOptions% < 5 and caRequireSaccadeResponse% = 0)) then
                skipToCheckJoystickInRight% := 1;
            endif;
            tempanswer% := Answer%(JoyChannel%,tNow);
            'printlog("stateWaitForJoystickInCenter%: d\n",tempanswer% );
            if tempanswer% = JSCenter% or skipToCheckJoystickInRight% = 1 or caRequireSaccadeResponse% = 1 then  'if joystick is in center, or has previously been centered
                'Allow dual report, but either case will advance the state
                if joystickHasBeenCentered% = 1 then
                    PrintLog("state stateWaitForJoystickInCenter: Joystick has previously been centered\n");
                endif;
                if tempanswer% = JSCenter% then
                    PrintLog("state stateWaitForJoystickInCenter: Joystick is in center\n");
                endif;
                
                'once joystick is centered, check for withheld reward
                if rewardWithheld% = 1 then
                    Reward%();  'Give reward now that joystick is in center
                    rewardWithheld% := 0;  'reset
                endif;
                
                docase
                case caTrainingOptions% = 0 then
                    ChangeStateTo(stateWaitForJoystickInRight%,tNow);
                case caTrainingOptions% = 1 then   
                    ChangeStateTo(stateWaitForJoystickInRight%,tNow);
                case caTrainingOptions% = 2 then  'don't require acquisition until the fixpt is actually ON
                    ChangeStateTo(stateStartTrial%,tNow);
                case (caTrainingOptions% = 3 or caTrainingOptions% = 4) and caRequireSaccadeResponse% = 1 then 'start trial on saccade-only experiments
                    ChangeStateTo(stateStartTrial%,tNow); 
                case caTrainingOptions% = 3 or caTrainingOptions% = 4 then
                    ChangeStateTo(stateWaitForJoystickInRight%,tNow);  'Animal will need to move joystick first, then trial starts   
                case caTrainingOptions% = 5 then  'cue image forced choice needs joystick to start in center, don't require acquisition until the fixpt is actually ON
                    ChangeStateTo(stateStartTrial%,tNow);    
                endcase
                joystickHasBeenCentered% := 0;  'Reset to not-been-centered default
                skipToCheckJoystickInRight% := 0;  'Reset to not-OK-to-skip default
            endif;
            
            
        case iState% = stateWaitForJoystickInRight% then  'note that except for the "blinking fixation" training stage, in all
            'other stages the program will wait here for the joystick.  As of now
            'there are no lazy penalties being imagined
            'printlog("Joystick is in position %d\n",Answer%(JoyChannel%,tNow));
            'check to make sure fixation has been maintained, if required. ONLY required here under training v.2 (fixation training)
            if caRequireFixation% = 1 and caTrainingOptions% = 2 and Looking%(xEye, yEye) <> 1 then
                PrintLog("stateWaitForJoystickInRight: failed, broke fixation\n");
                SampleText("Fixation broken before joystick moved to start trial, trial aborted",tNow);
                ChangeStateTo(stateAbort%, tNow);
                trialNotStarted% := 1;  'did not get to stateStartTrial before aborting, do not advance even if advancing on abort
                joystickHasBeenCentered% := 1;  'presumably joystick has not gone right yet
            endif;
            'This abort procedure was added when the Unic code was added.  However, it appears we cannot abort at this step (at least, not on the first trial, maybe ever) because the fixation point isn't up.  -jj 10/24/16
'            if tNow - tStateStart > caAcquisitionTime then  'simple abort on failure to move joystick to right
'                PrintLog("stateWaitForJoystickInRight: failed.\n");
'                SampleText("Failure to move joystick to right, trial aborted",tNow);
'                ChangeStateTo(stateAbort%, tNow);
'                trialNotStarted% := 1;  'did not get to stateStartTrial before aborting, do not advance even if advancing on abort
'                joystickHasBeenCentered% := 1;  'presumably joystick has not gone right yet
'            endif
            tempanswer% := Answer%(JoyChannel%,tNow);
            if tempanswer% = JSRight% then  'if joystick is in right
                PrintLog("stateWaitForJoystickInRight: Joystick in right\n");
                docase
                case caTrainingOptions% = 0 then
                    caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand);
                    Reward%();
                    ChangeStateTo(stateTrialCompletedPause%,tNow);
                case caTrainingOptions% = 1 then   
                    ChangeStateTo(stateHoldJoystickInRight%,tNow);
                case caTrainingOptions% = 2 then  'if fixation is required to be held, that is done below.
                    ChangeStateTo(stateHoldJoystickInRight%,tNow);
                case caTrainingOptions% > 2 then
                    ChangeStateTo(stateHoldJoystickInRight%,tNow);
                endcase
            endif;
            if caTrainingOptions% = 2 then
                'check to see if flashing fixation point should turn off due to the time it has been up
                if tNow - tStateStart > caFixAlternationTime then  'turn off fixation on failure to get joystick
                    PrintLog("stateWaitForJoystickInRight: failed, fixpt time is over\n");
                    ChangeStateTo(stateTrainingFixPtOff%, tNow);
                    joystickHasBeenCentered% := 1;  'presumably joystick has not gone right yet
                endif;
            endif
            
            
        case iState% = stateHoldJoystickInRight% then 
            
            if caRequireFixation% = 1 and caTrainingOptions% = 2 and Looking%(xEye, yEye) <> 1 then
                PrintLog("stateHoldJoystickInRight: failed, broke fixation\n");
                SampleText("Fixation broken while holding joystick to start trial, trial aborted",tNow);
                ChangeStateTo(stateAbort%, tNow);
                trialNotStarted% := 1;  'did not get to stateStartTrial before aborting, do not advance even if advancing on abort
            endif;
            
            tempanswer% := Answer%(JoyChannel%,tNow);
            if tempanswer% = JSRight% then  'if joystick is still in right
                if tNow - tStateStart > caTrainingHoldTime then
                    caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand);
                    docase
                    case caTrainingOptions% <= 2 then 'for early training, this goes to the reward pathway
                        if caReturnForReward% = 0 then 'reward immediately
                            Reward%();
                            PrintLog("stateHoldJoystickInRight: Immediate Reward\n");
                            if caTrainingOptions% = 2 then
                                ChangeStateTo(stateTrainingFixPtOff%,tNow);
                            else
                                ChangeStateTo(stateTrialCompletedPause%,tNow);
                            endif;
                        else
                            PrintLog("stateHoldJoystickInRight: Waiting for return to center\n");
                            ChangeStateTo(stateWaitForJoystickInCenterAndReward%,tNow);
                        endif
                    case caTrainingOptions% > 2 then 'but for later experiments, this initiates the trial
                        PrintLog("stateHoldJoystickInRight: Starting Trial\n");
                        ChangeStateTo(stateStartTrial%,tNow);  'turn on fixpt and start trial
                        nextStateImmed% := 1;  'start trial ASAP
                    endcase
                endif;
            else 'do not give reward if joystick not held long enough, but do not assess any penalty
                caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand);
                docase
                case caTrainingOptions% = 1 then  'simply start over for very early training (<1 is not legal here)
                    PrintLog("stateHoldJoystickInRight: failed.\n");
                    ChangeStateTo(stateTrialCompletedPause%,tNow);
                    'Joystick has been centered, but DO NOT indicate so - for reward-on-lever we need to ensure the timing is right, start everything fresh after ITI
                case caTrainingOptions% = 2 then  'turn off fixation point and start again
                    PrintLog("stateHoldJoystickInRight: failed, fixpt off\n");
                    ChangeStateTo(stateTrainingFixPtOff%, tNow);
                    joystickHasBeenCentered% := 1;  'joystick centered before criterion time
                case caTrainingOptions% > 2 then  'I think this should be an abort, but don't go to stateAbort because no fixation point is up and StateWaitForBlank will never end
                    PrintLog("stateHoldJoystickInRight: failed.\n");
                    SampleText("Joystick not held to trial start, trial aborted",tNow);
                    ChangeStateTo(stateAbortWait%, tNow);  'go directly to StateAbortWait, do not need to turn off fixation point
                    trialNotStarted% := 1;  'did not get to stateStartTrial before aborting, do not advance even if advancing on abort
                    joystickHasBeenCentered% := 1;  'joystick centered before criterion time
                endcase
            endif;
            
            
            
        case iState% = stateWaitForJoystickInCenterAndReward% then
            
            if caRequireFixation% = 1 and caTrainingOptions% = 2 and Looking%(xEye, yEye) <> 1 then  'caTrainingOptions MUST be 2 if caRequireFixation is 1, but I added the check here for consistency
                PrintLog("stateWaitForJoystickInRight: failed, broke fixation\n");
                SampleText("Fixation broken while waiting for joystick to center, trial aborted",tNow);
                ChangeStateTo(stateAbort%, tNow);
            endif;        
            
            tempanswer% := Answer%(JoyChannel%,tNow);
            'printlog("Joystick is in position %d\n",tempanswer% );
            if tempanswer% = JSCenter% then  'if joystick is in center
                Reward%();
                PrintLog("stateWaitForJoystickInCenterAndReward: Joystick in center, reward\n");
                if caTrainingOptions% = 2 then
                    ChangeStateTo(stateTrainingFixPtOff%,tNow);
                    joystickHasBeenCentered% := 1;  'joystick centered
                else
                    ChangeStateTo(stateTrialCompletedPause%,tNow);
                    'Joystick has been centered, but DO NOT indicate so - for reward-on-lever we need to ensure the timing is right, start everything fresh after ITI
                endif;
            endif;        
            
            
            
        case iState% = stateStartTrial% then
            ' Start trial. Put up fixation point.
            UpdateToolbarText();
            PrepareTrial();
            printlog("Starting trial #%d\n",caCurrTrialIndex%+1);
            SampleText("Start Trial "+Str$(caCurrTrialIndex%+1),tNow);
            caCountAllTrials% += 1;
            'Give heartbeat signal at start of each trial  
            SafeSampleKey("1");
            yield(0.01);  'this will likely be positioned very close to the "F" below, so give a tiny bit of time, 10 ms should be enough
            if caTrainingOptions% <= 4 then 'go/no-go
                docase
                case trialType% = trialtypeAttendToward% then
                    caCountTowardTrials% += 1;
                case trialType% = trialtypeAttendAway% then
                    caCountAwayTrials% += 1;
                else
                    PrintLog("ERROR: Unknown trial type (" + str$(trialType%) + "\n");
                endcase
            else 'forced choice
                docase
                case trialResponseDirection% = 1 then
                    caCountLeftTrials% += 1;
                case trialResponseDirection% = 3 then
                    caCountRightTrials% += 1;
                case trialResponseDirection% = 0 then
                    caCountNontargetTrials% += 1;
                else
                    printlog("ERROR: Unknown response direction!\n");
                endcase
            endif;
            
            PrintLog("stateStartTrial: Request Fixation Point\n");
            SafeSampleKey("F");
            ChangeStateTo(stateWaitForFixPtOn%, tNow);
            
            
        case iState% = stateWaitForFixPtOn% then
            tTrigger := View(DataWindow%).NextTime(FixationPointChannel%, tStateStart, vTrigger);
            if tTrigger > tStateStart then
                if tTrigger < MaxTime() then  'don't need to change way tLast is updates because we search from tStateStart
                    ' Fixation point is up
                    PrintLog("stateWaitForFixPtOn: signal received. " + str$(tTrigger) + "\n");
                    tLastTrigger := tTrigger;
                    tTrialStart := tTrigger;
                    if caRequireFixation% = 1 then
                        ChangeStateTo(stateWaitForAcquisition%, tTrigger);
                        DrawStim(1);	' this draws the location of the fixpt.
                    else
                        if caTrainingOptions% = 2 then  'this is normal, wait for joystick move to right
                            ChangeStateTo(stateWaitForJoystickInRight%, tTrigger);
                        else  'if we are presenting stimuli with NO eyetracker, wait for the normal fixation period then start stimuli
                            ChangeStateTo(stateHoldFixationToStimOn%, tNow);
                        endif;
                    endif;
                    if caTrainingOptions% <= 4 then
                        if trialType% = trialtypeAttendToward% then
                            SampleText("Fixation point on, Attend Toward",tTrigger);
                        else
                            SampleText("Fixation point on, Attend Away",tTrigger);
                        endif;
                    else
                        docase
                        case trialResponseDirection% = 1 then
                            SampleText("Fixation point on, Expected Response Left",tTrigger);
                        case trialResponseDirection% = 3 then
                            SampleText("Fixation point on, Expected Response Right",tTrigger);
                        else
                            SampleText("Fixation point on, Nontarget Trial",tTrigger);
                        endcase;
                        
                    endif;
                endif;
            endif
            
            
        case iState% = stateWaitForAcquisition% then
            'getPreciseTiming := 1;
            ' Waiting for eye to fall inside of fixation window
            if Looking%(xEye, yEye) = 1 then
                PrintLog("stateWaitForAcquisition: eye in fixation window.\n");
                SampleText("Fixation Acquired",tNow);
                if caTrainingOptions% = 2 then  'there are no stimuli for training
                    ChangeStateTo(stateWaitForJoystickInRight%, tNow);
                    joystickHasBeenCentered% := 1;  'joystick not moved right yet
                else
                    ChangeStateTo(stateHoldFixationToStimOn%, tNow);
                    'joystick is in right for this state, so it has not been centered
                endif
                'getPreciseTiming := 0;
            else 
                if tNow - tStateStart > caAcquisitionTime then  'simple abort on failure to acquire
                    PrintLog("stateWaitForAcquisition: failed.\n");
                    SampleText("Failure to acquire fixation, trial aborted",tNow);
                    ChangeStateTo(stateAbort%, tNow);
                    'getPreciseTiming := 0;
                endif
            endif
            
            
        case iState% = stateHoldFixationToStimOn% then  'by "stim" here we mean "animation"
            
            ' Eye must remain inside of fixation window and joystick must remain in start position
            tempanswer% := Answer%(JoyChannel%,tNow);
            joystickInStartPosition% := JoyInStartPosition%(tempanswer%);

            if (Looking%(xEye, yEye) = 1 or caRequireFixation% < 1) and joystickInStartPosition% = 1 then  'if eye position is OK AND joystick position is OK, wait for caFixationTime and start stimulus
                if tNow - tStateStart > caFixationTime then
                    PrintLog("stateHoldFixationToStimOn: Success. Gratings up...\n");
                    SafeSampleKey("S");  'request animation
                    ChangeStateTo(stateWaitForStimOn%, tNow);
                endif
            else 'if fixation/joystick hold fails before stim on, begin abort, check to see if it is a FA
                docase
                case joystickInStartPosition% = 0 then  'if a response has occurred, quit while you're ahead
                    docase
                    case tempanswer% = JSCenter% then 'return to center (not applicable for forced choice)
                        PrintLog("stateHoldFixationToStimOn: joystick returned to center, aborting trial.\n");
                        FAIsResponse% := 1;
                        ChangeStateTo(stateAbort%, tNow);
                        SampleText("Joystick not held, False Alarm response before stimulus on, trial aborted",tNow);
                        joystickHasBeenCentered% := 1;  'joystick centered by FA
                    case tempanswer% = JSLeft% then 'overshot or left
                        PrintLog("stateHoldFixationToStimOn: joystick moved to left, aborting trial.\n");
                        FAIsResponse% := 1;
                        ChangeStateTo(stateAbort%, tNow);
                        if caTrainingOptions% = 5 then
                            SampleText("Joystick not held, False Alarm response to left before stimulus on, trial aborted",tNow); 
                            joystickHasBeenCentered% := 0;  'not centered in forced choice
                        else
                            SampleText("Joystick not held, False Alarm response all the way to left before stimulus on, trial aborted",tNow); 
                            joystickHasBeenCentered% := 1;  'joystick centered by FA - overshot is centering
                        endif;
                    case tempanswer% = JSRight% then 'right, cannot currently be overshot because all GNG start in right, and overshot can only occur in GNG
                        PrintLog("stateHoldFixationToStimOn: joystick moved to right, aborting trial.\n");
                        FAIsResponse% := 1;
                        ChangeStateTo(stateAbort%, tNow);
                        SampleText("Joystick not held, False Alarm response to right before stimulus on, trial aborted",tNow);  
                        joystickHasBeenCentered% := 0;  'not centered in forced choice
                    endcase;
                case Looking%(xEye, yEye) = 0 and caRequireFixation% = 1 then  'no joystick move, but a fixation break
                    PrintLog("stateHoldFixationToStimOn: failure to hold fixation, aborting trial.\n");
                    FAIsResponse% := 0;  'not a false alarm, just a fixation break
                    ChangeStateTo(stateAbort%, tNow);
                    SampleText("Failure to hold fixation to stim on, trial aborted",tNow); 
                else  'keep checking until false alarm check window is closed, joystick is in intermediate state
                    ChangeStateTo(stateCheckFalseAlarm%, tNow);
                    temptext$ := "before stimulus on";
                    'will check to see if joystick is centered later
                endcase;
            endif
            
            
        case iState% = stateWaitForStimOn% then  'by "stim" here we mean "animation"
            tTrigger := View(DataWindow%).NextTime(StimChannel%, tLastTrigger, vTrigger);
            if tTrigger > tLastTrigger and vTrigger = 0 then
                if tTrigger < MaxTime() then  'here we don't change the procedure for tLast because we are searching from tLastTrigger, which is changed locally
                    'animation is up
                    PrintLog("stateWaitForStimOn: animation has begun.\n");
                    tStimOn := tTrigger;
                    tLastTrigger := tTrigger;
                    ChangeStateTo(stateHoldFixationToCC%, tTrigger);
                    SampleText("Animation on, Trial #" + str$(caCurrTrialIndex%+1) + ", cue image is "+trialCueName$, tTrigger);
                endif;
                
            endif
            
            
        case iState% = stateTrainingFixPtOff% then 
            
            ' Signal "X" turns off fixpt and stimulus. The next state 'stateWaitForBlank' only checks for 
            ' fixpt off. 
            PrintLog("stateTrainingFixPtOff: send X key.\n");
            SafeSampleKey("X");
            if caRequireFixation% <> 0 then    
                view(XYWindow%).XYColour(iFixationWindowChannel%,13);  'Force fixation window to blue
            endif
            
            ChangeStateTo(stateWaitForBlankTraining%, tNow);
            
            
        case iState% = stateWaitForBlankTraining% then
            
            ' we just wait for fix point off signal in this case. 
            tTrigger := View(DataWindow%).NextTime(FixationPointChannel%, tLastTrigger, vTrigger);
            if tTrigger > tLastTrigger then
                ' Fixation point is off
                PrintLog("stateWaitForBlankTraining: Fix pt is off.\n");
                tLastTrigger := tTrigger; 
                ChangeStateTo(stateTrainingWait%, tNow);                
            endif
            
            
            
        case iState% = stateAbort% then
            
            ' Signal "X" turns off fixpt and stimulus. The next state 'stateWaitForBlank' only checks for 
            ' fixpt off. 
            PrintLog("stateAbort: send X key.\n");
            SafeSampleKey("X");
            
            
            if caRequireFixation% <> 0 then 
                view(XYWindow%).XYColour(iFixationWindowChannel%,13);  'Force fixation window to blue
                'answer windows
                if caTrainingOptions% > 2 then
                    view(XYWindow%).XYColour(iAnswerWindowChannelMain%,13);  'Force main stimulus answer window to blue
                    view(XYWindow%).XYColour(iAnswerWindowChannelDist1%,13);  'Force distracter1 answer window to blue
                endif;
            endif;
            
            
            ' tally up aborted trials, right now not distinguishing between response aborts and regular aborts
            caCountAllTrialsAbort% += 1;
            if caTrainingOptions% <= 4 then 'go/no-go
                docase
                case trialType% = trialtypeAttendToward% then
                    caCountTowardTrialsAbort% += 1;
                case trialType% = trialtypeAttendAway% then
                    caCountAwayTrialsAbort% += 1;
                else 
                    PrintLog("ERROR: Unknown trial type (" + str$(trialType%) + ")\n");
                endcase
            else 'forced choice
                docase
                case trialResponseDirection% = 1 then  'response expected left
                    caCountLeftTrialsAbort% += 1;
                case trialResponseDirection% = 3 then  'response expected right
                    caCountRightTrialsAbort% += 1;
                case trialResponseDirection% = 0 then  'no response expected
                    caCountNontargetTrialsAbort% += 1; 
                else
                    printlog("Error: Unknown response direction!\n");
                endcase;
            endif;
            
            
            ' move on
            ChangeStateTo(StateAbortWaitForBlank%, tStateStart);  'don't update time, carry forward
            
            
            
            
        case iState% = StateAbortWaitForBlank% then
            
            ' we just wait for fix point off signal in this case. 
            tTrigger := View(DataWindow%).NextTime(FixationPointChannel%, tLastTrigger, vTrigger);
            if tTrigger > tLastTrigger then
                ' Fixation point is off
                PrintLog("stateWaitForBlank: Fix pt is off.\n");
                tLastTrigger := tTrigger;
                if FAIsResponse% = 1 then
                    FAIsResponse% := 0;
                    ChangeStateTo(stateFalseAlarmWait%, tTrigger);
                    'will advance at stateTrialCompleted
                else                
                    ChangeStateTo(stateAbortWait%, tStateStart);  'don't update time, "credits" for time served
                endif;
                if caRequireFixation% <> 0 then
                    DrawStim(0);	' this undraws the location of the fixpt.
                endif;
            endif
            
            
            
        case iState% = stateAbortWait% then
            
            var tempWaitTime;
            
            if abortIsPostCC% = 0 then  'set abort wait time based on whether it was pre- or post-CC
                tempWaitTime := caAbortWaitTime;
            else
                tempWaitTime := caAbort2WaitTime;
            endif;
            
            'If joystick has not been centered, allow any centering here to count, check this every time
            if joystickHasBeenCentered% = 0 and caRequireSaccadeResponse% = 0 then   'don't bother if we are using saccade response
                tempanswer% := Answer%(JoyChannel%,tNow);
                'printlog("Joystick is in position %d\n",tempanswer% );
                if tempanswer% = JSCenter% then
                    joystickHasBeenCentered% := 1;
                endif
            endif            
            
            'if wait time is over
            if tNow - tStateStart > tempWaitTime then
                if abortIsPostCC% = 0 then
                    PrintLog("stateAbortWait: time out is done.\n");
                    ChangeStateTo(stateWaitForJoystickInCenter%, tNow);
                else
                    PrintLog("stateAbortWait: time out is done (post-CC abort).\n");
                    ChangeStateTo(stateWaitForJoystickInCenter%, tNow);
                    abortIsPostCC% := 0;
                endif
                
                'If this abort came after the trial was started (stateStartTrial), report the end of the trial whether we advance or not
                if trialNotStarted% = 0 then
                    SampleText("End Trial "+Str$(caCurrTrialIndex%+1),tNow);
                endif
                
                ' check to see if we advance on abort, make sure we don't go beyond final trial
                if advanceOnAbort% = 1 and trialNotStarted% = 0 then  'if we are advancing on abort, now would be the time.  Don't abort-advance if we never started the trial at all.
                    SafeSampleKey("a");
                    PrintLog("Trial #%d completed.\n",caCurrTrialIndex%+1);
                    nTrialsCompleted% += 1;
                    caCurrTrialIndex% += 1;
                    if caTrainingOptions% > 2 then 'note that if this is a "hog", we can find a way to update only when the window actually changes
                        UpdateOnScreenPositions();  'with trial advanced, update locations of fixpt/stimuli if they might change
                    endif;
                    if nTrialsCompleted% = caNumberOfTrials% then
                        Stop%();
                        iStatus% := 0;
                    endif;    
                endif;
                
                trialNotStarted% := 0;  'reset trialNotStarted regardless
                
            endif;
            
            
            
        case iState% = stateFalseAlarmWait% then
            
            if tNow - tStateStart > caFalseAlarmWaitTime then
                PrintLog("stateFalseAlarmWait: time out is done.\n");
                ChangeStateTo(stateTrialCompleted%, tNow);
            endif      
            
            
            
            
        case iState% = stateCheckFalseAlarm% then
            
            if tNow - tStateStart < caFalseAlarmCheckWindow then
                tempanswer% := Answer%(JoyChannel%,tNow);
                docase
                case tempanswer% = JSCenter% then 'return to center
                    PrintLog("stateCheckFalseAlarm: joystick returned to center " + GetCurrentEpoch$() + ", aborting trial.\n");
                    FAIsResponse% := 1;
                    ChangeStateTo(stateAbort%, tNow);
                    SampleText("Joystick not held, False Alarm response " + GetCurrentEpoch$() + ", trial aborted",tNow);
                    joystickHasBeenCentered% := 1;  'joystick centered by FA
                case tempanswer% = JSLeft% then 'overshot
                    PrintLog("stateCheckFalseAlarm: joystick moved to left " + GetCurrentEpoch$() + ", aborting trial.\n");
                    FAIsResponse% := 1;
                    ChangeStateTo(stateAbort%, tNow);
                    SampleText("Joystick not held, False Alarm response all the way to left " + GetCurrentEpoch$() + ", trial aborted",tNow); 
                    joystickHasBeenCentered% := 1;  'joystick centered by FA - overshot is centering
                endcase;
            else 'credit the animal for time served on the abort if it's not a response
                PrintLog("stateCheckFalseAlarm: no response in window, aborting trial.\n");
                ChangeStateTo(stateAbort%, tNow-caFalseAlarmCheckWindow); 
                SampleText("Fixation broken, no response, trial aborted",tNow);
            endif;
            
            
        case iState% = stateCheckFalseAlarmSaccade% then
            
            if tNow - tStateStart < caFalseAlarmCheckWindow then
                tempanswer% := EyeAnswer%(xEye,yEye);
                docase
                case tempanswer% = 1 then 'response to target
                    PrintLog("stateCheckFalseAlarmSaccade: response to target " + GetCurrentEpoch$() + ", aborting trial.\n");
                    FAIsResponse% := 1;
                    ChangeStateTo(stateAbort%, tNow);
                    SampleText("False Alarm saccade to target " + GetCurrentEpoch$() + ", trial aborted",tNow);
                case tempanswer% = -1 then 'overshot
                    PrintLog("stateCheckFalseAlarmSaccade: response to distractor " + GetCurrentEpoch$() + ", aborting trial.\n");
                    FAIsResponse% := 1;
                    ChangeStateTo(stateAbort%, tNow);
                    SampleText("False Alarm saccade to distractor " + GetCurrentEpoch$() + ", trial aborted",tNow); 
                endcase;
            else 'credit the animal for time served on the abort if it's not a response
                PrintLog("stateCheckFalseAlarmSaccade: no response in temporal window, aborting trial.\n");
                ChangeStateTo(stateAbort%, tNow-caFalseAlarmCheckWindow); 
                SampleText("Fixation broken, no response, trial aborted",tNow);
            endif;
                  
            
            
        case iState% = stateHoldFixationToCC% then
            
            tempanswer% := Answer%(JoyChannel%,tNow);
            joystickInStartPosition% := JoyInStartPosition%(tempanswer%);
            docase            
            case (Looking%(xEye, yEye) = 0 and caRequireFixation% = 1) or joystickInStartPosition% = 0 then  'if fixation broken/joystick moved, begin abort procedure, check to see if it's a FA
                docase
                'for saccade response, check for false alarm
                case Looking%(xEye, yEye) = 0 and caRequireFixation% = 1 and caRequireSaccadeResponse% = 1 then  'fixation break, possible saccade FA response
                    PrintLog("stateHoldFixationToCC: failure to hold fixation, checking for saccade FA, aborting trial.\n");
                    'FAIsResponse% := 0;  'not a false alarm, just a fixation break
                    ChangeStateTo(stateCheckFalseAlarmSaccade%, tNow);
                    SampleText(Print$("failure to hold fixation to contrast change, checking for saccade FA, trial aborted"),tNow);   
                'for image cue response training, if answer is allowed before "contrast change" and answer has occurred in appropriate window                    
                case joystickInStartPosition% = 0 and caTrainingOptions% = 5 and tNow >= trialEarlyGoTime + tStateStart then  
                    ' Got an answer. Record marker for correct/incorrect answer
                    if tempanswer% = JSRight% then
                        printlog("Response Right\n");
                        joystickHasBeenCentered% := 0;  'joystick not centered
                    else
                        printlog("Response Left\n");
                        joystickHasBeenCentered% := 0;  'joystick not centered
                    endif
                    SafeSampleKey("X");  'turn off stimulus first thing
                    docase
                    case tempanswer% = JSRight% and trialResponseDirection% = 3 then  'right expected, response to right
                        caCountAllTrialsCorrect% += 1;
                        caCountRightTrialsCorrect% += 1;
                        caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand);
                        SampleText("Hit, Right",tNow);
                        'getPreciseTiming := 0;
                        Reward%();
                        ChangeStateTo(stateTrialCompletedWaitForBlank%, tNow); 
                    case tempanswer% = JSLeft% and trialResponseDirection% = 1 then 'left expected, response to left
                        caCountAllTrialsCorrect% += 1;
                        caCountLeftTrialsCorrect% += 1;
                        caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand);
                        SampleText("Hit, Left",tNow);
                        'getPreciseTiming := 0;
                        Reward%();
                        ChangeStateTo(stateTrialCompletedWaitForBlank%, tNow); 
                    case tempanswer% = JSLeft% and trialResponseDirection% = 3 then 'right expected, response to left
                        caCountAllTrialsIncorrect% += 1;
                        caCountRightTrialsIncorrect% += 1;
                        caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand) + caMissPenalty;
                        SampleText("Miss, Response Left, Expected Response Right",tNow);
                        ChangeStateTo(stateTrialCompletedWaitForBlank%, tNow);
                    case tempanswer% = JSRight% and trialResponseDirection% = 1 then 'left expected, response to right
                        caCountAllTrialsIncorrect% += 1;
                        caCountLeftTrialsIncorrect% += 1;
                        caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand) + caMissPenalty;
                        SampleText("Miss, Response Right, Expected Response Left",tNow);
                        ChangeStateTo(stateTrialCompletedWaitForBlank%, tNow);
                    case tempanswer% = JSLeft% and trialResponseDirection% = 0 then 'no response expected, response to left
                        caCountAllTrialsIncorrect% += 1;
                        caCountNontargetTrialsIncorrect% += 1;
                        caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand) + caMissPenalty;
                        SampleText("False Alarm " + GetCurrentEpoch$() + ", Response Left, Expected No Response",tNow);
                        ChangeStateTo(stateTrialCompletedWaitForBlank%, tNow);
                    case tempanswer% = JSRight% and trialResponseDirection% = 0 then 'no response expected, response to right
                        caCountAllTrialsIncorrect% += 1;
                        caCountNontargetTrialsIncorrect% += 1;
                        caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand) + caMissPenalty;
                        SampleText("False Alarm " + GetCurrentEpoch$() + ", Response Right, Expected No Response",tNow);
                        ChangeStateTo(stateTrialCompletedWaitForBlank%, tNow);    
                    endcase
                case joystickInStartPosition% = 0 and tempanswer% = JSCenter% then 'FA in GNG
                    PrintLog("stateHoldFixationToCC: false alarm " + GetCurrentEpoch$() + ", aborting trial.\n");
                    FAIsResponse% := 1;
                    ChangeStateTo(stateAbort%, tNow);
                    SampleText("False Alarm " + GetCurrentEpoch$() + ", trial aborted",tNow);
                    joystickHasBeenCentered% := 1;  'joystick centered by FA
                case joystickInStartPosition% = 0 and tempanswer% = JSLeft% and caTrainingOptions% < 5 then 'answer and overshot in GNG
                    PrintLog("stateHoldFixationToCC: false alarm and overshot " + GetCurrentEpoch$() + ", aborting trial.\n");
                    FAIsResponse% := 1;
                    ChangeStateTo(stateAbort%, tNow);
                    SampleText("False Alarm and overshot " + GetCurrentEpoch$() + ", trial aborted",tNow);
                    joystickHasBeenCentered% := 1;  'joystick centered by FA - overshot is centering
                case joystickInStartPosition% = 0 and tempanswer% = JSLeft% then 'FA Left in forced choice
                    PrintLog("stateHoldFixationToCC: false alarm (left) " + GetCurrentEpoch$() + ", aborting trial.\n");
                    FAIsResponse% := 1;
                    ChangeStateTo(stateAbort%, tNow);
                    SampleText("False Alarm (left) " + GetCurrentEpoch$() + ", trial aborted",tNow);
                    joystickHasBeenCentered% := 0;  'joystick not centered 
                case joystickInStartPosition% = 0 and tempanswer% = JSRight% then 'FA Right in forced choice
                    PrintLog("stateHoldFixationToCC: false alarm (right) " + GetCurrentEpoch$() + ", aborting trial.\n");
                    FAIsResponse% := 1;
                    ChangeStateTo(stateAbort%, tNow);
                    SampleText("False Alarm (right) " + GetCurrentEpoch$() + ", trial aborted",tNow);
                    joystickHasBeenCentered% := 0;  'joystick not centered   
                case Looking%(xEye, yEye) = 0 and caRequireFixation% = 1 and caRequireSaccadeResponse% = 0 then  'no joystick move, but a fixation break
                    PrintLog("stateHoldFixationToCC: failure to hold fixation, aborting trial.\n");
                    FAIsResponse% := 0;  'not a false alarm, just a fixation break
                    ChangeStateTo(stateAbort%, tNow);
                    SampleText("Failure to hold fixation to contrast change, trial aborted",tNow); 
                else  'keep checking, joystick is in intermediate position (this may never trigger following addition of "joystickInStartPosition" syntax)
                    ChangeStateTo(stateCheckFalseAlarm%, tNow);
                    temptext$ :=  GetCurrentEpoch$();
                    'will check for centering later
                endcase;
                
            else 
                if (tNow - tStateStart) > (trialHazardFunctionTime) then
                    ' we no longer turn off stimulus and advance it, but we DO allow response now
                    docase
                    case caTrainingOptions% <= 4 and caRequireSaccadeResponse% = 0 then  'use joystick response
                        ChangeStateTo(stateWaitForAnswer%, tStateStart+trialHazardFunctionTime);  'this will be the precise time rather than the "noticed" time
                    case caTrainingOptions% <= 4 and caRequireSaccadeResponse% = 1 then  'use saccade response   
                        ChangeStateTo(stateWaitForAnswerSaccade%, tStateStart+trialHazardFunctionTime);  'this will be the precise time rather than the "noticed" time
                    else 'forced choice
                        ChangeStateTo(stateWaitForAnswerFC%, tStateStart+trialHazardFunctionTime);  'this will be the precise time rather than the "noticed" time
                    endcase;
                    
                    'This docase sets the color of the changed location to red on the "monitor screen"
                    docase
                    case trialTargetLoc% = 0 then
                        view(XYWindow%).XYColour(iFixationWindowChannel%,16);  'Change fixation window to red
                    case trialTargetLoc% = 1 then
                        view(XYWindow%).XYColour(iAnswerWindowChannelMain%,16);  'Change main window to red
                    case trialTargetLoc% = 2 then
                        view(XYWindow%).XYColour(iAnswerWindowChannelDist1%,16);  'Change dist1 window to red
                    endcase
                    'This docase does the appropriate SampleTexting
                    docase
                    case trialType% = trialtypeAttendToward% and caTrainingOptions% <= 4 then
                        if trialTargetLoc% > 0 then
                            if trialCatch% = 0 then
                                Sampletext("Contrast Change, Level " + Str$(thisContrast%) + ", Attend Toward",tTrigger+trialHazardFunctionTime);
                            else
                                Sampletext("Contrast Change, Level " + Str$(thisContrast%) + ", Attend Toward (catch)",tTrigger+trialHazardFunctionTime);
                            endif
                        else
                            Sampletext("Attend Toward, No Contrast Change",tTrigger+trialHazardFunctionTime);
                        endif
                    case trialType% = trialtypeAttendAway% and caTrainingOptions% <= 4 then
                        if trialTargetLoc% > 0 then
                            if trialCatch% = 0 then
                                Sampletext("Contrast Change, Level " + Str$(thisContrast%) + ", Attend Away",tTrigger+trialHazardFunctionTime);
                            else
                                Sampletext("Contrast Change, Level " + Str$(thisContrast%) + ", Attend Away (catch)",tTrigger+trialHazardFunctionTime);
                            endif
                        else
                            Sampletext("Attend Away, No Contrast Change",tTrigger+trialHazardFunctionTime);
                        endif
                    case trialType% = trialtypeNoAttend% and caTrainingOptions% <= 4 then
                        if trialTargetLoc% > 0 then
                            if trialCatch% = 0 then
                                Sampletext("Contrast Change, Level " + Str$(thisContrast%) + ", No Attend ",tTrigger+trialHazardFunctionTime);
                            else
                                Sampletext("Contrast Change, Level " + Str$(thisContrast%) + ", No Attend (catch)",tTrigger+trialHazardFunctionTime);
                            endif
                        else
                            Sampletext("No Attend, No Contrast Change",tTrigger+trialHazardFunctionTime);
                        endif    
                    case caTrainingOptions% = 5 then
                        if trialTargetLoc% > 0 then
                            if trialCatch% = 0 then
                                Sampletext("Contrast Change, Level " + Str$(thisContrast%),tTrigger+trialHazardFunctionTime);
                            else
                                Sampletext("Contrast Change, Level " + Str$(thisContrast%) + ", (catch)",tTrigger+trialHazardFunctionTime);
                            endif
                        else
                            Sampletext("No Contrast Change",tTrigger+trialHazardFunctionTime);
                        endif    
                    else
                        'if there are no-attend conditions, they will go in here.
                        PrintLog("ERROR! Unknown blocktype!!!\n");    'could change this, if it's ever relevant
                        Sampletext("Unknown attend condition!!!",tTrigger+trialHazardFunctionTime);
                    endcase
                endif
                
            endcase
            
            
            
        case iState% = stateWaitForAnswer% then
            'getPreciseTiming := 1;  'do we need precise timing here??
            if tNow - tStimOn > totalStimDur then  'no response, stimulus over, at this point we don't care where the eye position is
                SafeSampleKey("X");  'turn off animation (also kills fixation point, animation is probably already off here)
                if trialIsGo% > 0 then 'GO trial, expected response
                    PrintLog("stateWaitForAnswer: no response on go trial, miss\n");
                    if trialType% = trialtypeAttendToward% then
                        SampleText("Miss, Attend Toward",tNow);
                    else
                        SampleText("Miss, Attend Away",tNow);
                    endif;
                    ChangeStateTo(stateMiss%, tNow); 'go to miss penalty
                    'SafeSampleKey("a");  'advance stimulus, won't happen anywhere else
                    'joystick is not yet centered
                else
                    PrintLog("stateWaitForAnswer: no response on no-go trial, correct rejection\n");
                    docase
                    case trialType% = trialtypeAttendToward% then
                        caCountTowardTrialsCorrect% += 1;
                        SampleText("Correct Rejection, Attend Toward",tNow);
                    case trialType% = trialtypeAttendAway% then
                        caCountAwayTrialsCorrect% += 1;
                        SampleText("Correct Rejection, Attend Away",tNow);
                    case trialType% = trialtypeNoAttend% then
                        caCountAwayTrialsCorrect% += 1;
                        SampleText("Correct Rejection, No Attend Direction",tNow);    
                    endcase;
                    caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand);
                    if caWithholdNoGoReward% = 1 then
                        rewardWithheld% := 1;
                    else
                        Reward%();
                    endif;
                    ChangeStateTo(stateTrialCompletedWaitForBlank%, tNow);  'stateTrialCompletedWaitForBlank will advance
                    'joystick is not yet centered
                endif;
            else
                'Stimulus is still on, response window is still open...
                iAnswer% := Answer%(JoyChannel%,tNow);  'get answer
                docase
                case Looking%(xEye, yEye) = 0 and caRequireFixation% = 1 and caAllowFixationBreakAfterCC% = 0 then  'if fixation broken, abort
                    SafeSampleKey("s");
                    SampleText("Fixation broken during response window",tNow);
                    PrintLog("stateWaitForAnswer: fix broken - turn off stim\n");
                    ChangeStateTo(stateAbort%, tNow);
                    abortIsPostCC% := 1;
                    
                case iAnswer% = JSCenter% or iAnswer% = JSLeft% then
                    ' Got an answer. Record marker for correct/incorrect answer
                    if iAnswer% = JSCenter% then
                        printlog("Got answer\n");
                        caIsOvershot$ := "";  'back to center, all good
                        joystickHasBeenCentered% := 1;  'joystick centered by answer
                    else
                        printlog("Got answer, overshot\n");
                        caIsOvershot$ := ", Overshot";  'over center, note overshot
                        joystickHasBeenCentered% := 1;  'joystick centered by FA - overshot is centering
                    endif
                    
                    docase
                    case trialIsGo% > 0 then  'this is a GO trial, so this is a hit
                        SafeSampleKey("X");  'turn off stimulus first thing
                        caCountAllTrialsCorrect% += 1;
                        caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand);
                        docase
                        case trialType% = trialtypeAttendToward% then
                            caCountTowardTrialsCorrect% += 1;
                            SampleText("Hit, Attend Toward" + caIsOvershot$,tNow);
                        case trialType% = trialtypeAttendAway% then
                            caCountAwayTrialsCorrect% += 1;
                            SampleText("Hit, Attend Away" + caIsOvershot$,tNow);
                        case trialType% = trialtypeNoAttend% then
                            caCountAwayTrialsCorrect% += 1;
                            SampleText("Hit,  No Attend Direction" + caIsOvershot$,tNow);    
                        else
                            PrintLog("ERROR: Unknown trial type (" + str$(trialType%) + "\n");
                            SampleText("Hit, Unknown trial type" + caIsOvershot$,tNow);
                        endcase
                        'getPreciseTiming := 0;
                        Reward%();
                        ChangeStateTo(stateTrialCompletedWaitForBlank%, tNow); 
                    else  'it's a NO-GO trial, and we got an answer
                        'stimulus will be turned off in stateAbort, do not give "X"
                        caCountAllTrialsIncorrect% += 1;
                        caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand) + caMissPenalty;
                        docase
                        case trialType% = trialtypeAttendToward% then
                            caCountTowardTrialsIncorrect% += 1;
                            SampleText("False Alarm " + GetCurrentEpoch$() + ", Attend Toward" + caIsOvershot$,tNow);
                        case trialType% = trialtypeAttendAway% then
                            caCountAwayTrialsIncorrect% += 1;
                            SampleText("False Alarm " + GetCurrentEpoch$() + ", Attend Away" + caIsOvershot$,tNow);
                        case trialType% = trialtypeNoAttend% then
                            caCountAwayTrialsIncorrect% += 1;
                            SampleText("False Alarm " + GetCurrentEpoch$() + ", No Attend Direction" + caIsOvershot$,tNow);
                        else
                            PrintLog("ERROR: Unknown trial type (" + str$(trialType%) + "\n");
                            SampleText("False Alarm " + GetCurrentEpoch$() + ", Unknown trial type" + caIsOvershot$,tNow);
                        endcase
                        'getPreciseTiming := 0;
                        FAIsResponse% := 1;
                        ChangeStateTo(stateAbort%,tNow);  
                        abortIsPostCC% := 1;
                        
                    endcase
                endcase
            endif
            
            
        case iState% = stateWaitForAnswerSaccade% then
            'getPreciseTiming := 1;  'do we need precise timing here?? If so, stay in while loop until we get eye movements we expect
            if tNow - tStimOn > totalStimDur and answerWindowStart = 0 then  'no response, stimulus over, at this point we don't care where the eye position is
                SafeSampleKey("X");  'turn off animation (also kills fixation point, animation is probably already off here)
                if trialIsGo% > 0 then 'GO trial, expected response
                    PrintLog("stateWaitForAnswer: no response on go trial, miss\n");
                    if trialType% = trialtypeAttendToward% then
                        SampleText("Miss, Attend Toward",tNow);
                    else
                        SampleText("Miss, Attend Away",tNow);
                    endif;
                    ChangeStateTo(stateMiss%, tNow); 'go to miss penalty
                    caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand) + caMissPenalty;
                    'SafeSampleKey("a");  'advance stimulus, won't happen anywhere else
                    'joystick is not yet centered
                else
                    PrintLog("stateWaitForAnswer: no response on no-go trial, correct rejection\n");
                    docase
                    case trialType% = trialtypeAttendToward% then
                        caCountTowardTrialsCorrect% += 1;
                        SampleText("Correct Rejection, Attend Toward",tNow);
                    case trialType% = trialtypeAttendAway% then
                        caCountAwayTrialsCorrect% += 1;
                        SampleText("Correct Rejection, Attend Away",tNow);
                    case trialType% = trialtypeNoAttend% then
                        caCountAwayTrialsCorrect% += 1;
                        SampleText("Correct Rejection, No Attend Direction",tNow);    
                    endcase;
                    caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand);
                    if caWithholdNoGoReward% = 1 then
                        rewardWithheld% := 1;
                    else
                        Reward%();
                    endif;
                    ChangeStateTo(stateTrialCompletedWaitForBlank%, tNow);  'stateTrialCompletedWaitForBlank will advance
                    'joystick is not yet centered
                endif;
            else
                'Stimulus is still on, response window is still open...
                iAnswer% := EyeAnswer%(xEye, yEye);  'get answer
                
                'Do a preliminary check to update answerWindowTime if appropriate
                if (iAnswer% = 1 or iAnswer% = -1) and caAnswerWindowMin > 0 then 'Saccade answer requires minimum time, set caAnswerWindowMin to 0 to skip minimum time
                    ' Got an answer.  Update how long the eye has been in the response window
                    if answerWindowStart = 0 then 'this is the first time we have noticed the eye in an answer window
                        answerWindowWhich% := iAnswer%;  'note which window we are in
                        answerWindowStart := tNow;  'note when the eye entered the window, duration in window is as yet still 0
                        SampleText("Eye entered answer window",tNow);
                    else 'we have noticed the eye in an answer window before
                        if answerWindowWhich% = iAnswer% then  'if it was the same answer window as before
                            answerWindowTime := tNow-answerWindowStart; 'update time spent in answer window
                        else 'this is the second answer window we have entered, this is a miss
                            SafeSampleKey("X");
                            PrintLog("stateWaitForAnswer: two answer windows visited - turn off stim and consider a miss\n");
                            caCountAllTrialsIncorrect% += 1;
                            
                            answerWindowStart := 0;  'reset all of the answer window variables
                            answerWindowTime := 0;
                            answerWindowWhich% := 0;
                            
                            docase
                            case trialType% = trialtypeAttendToward% then
                                caCountTowardTrialsIncorrect% += 1;
                                SampleText("Miss, Two answer windows visited during response window, Attend Toward",tNow);
                            case trialType% = trialtypeAttendAway% then
                                caCountAwayTrialsIncorrect% += 1;
                                SampleText("Miss, Two answer windows visited during response window, Attend Away",tNow);
                            case trialType% = trialtypeNoAttend% then
                                caCountAwayTrialsIncorrect% += 1;
                                SampleText("Miss, Two answer windows visited during response window, No Attend Direction",tNow);    
                            else
                                PrintLog("ERROR: Unknown trial type (" + str$(trialType%) + "\n");
                                SampleText("Hit, Unknown trial type",tNow);
                            endcase
                            ChangeStateTo(stateMiss%, tNow); 'go to miss penalty
                            'SafeSampleKey("a");  'advance stimulus, won't happen anywhere else
                            caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand) + caMissPenalty;
                        endif;
                    endif;
                endif;
                
                docase
                    'we cannot do this step because fixation must be broken in order to respond
                    'in the future if there are issues with the animal breaking fixation and
                    'then NOT going to a response area we can revisit this somehow
'                case Looking%(xEye, yEye) = 0 and caRequireFixation% = 1 and caAllowFixationBreakAfterCC% = 0 then  'if fixation broken, abort
'                    SafeSampleKey("s");
'                    SampleText("Fixation broken during response window",tNow);
'                    PrintLog("stateWaitForAnswer: fix broken - turn off stim\n");
'                    ChangeStateTo(stateAbort%, tNow);
'                    abortIsPostCC% := 1;

                case iAnswer% = 0 and answerWindowStart <> 0 then  'answer window has been visited and left
                    'This is a miss
                    SafeSampleKey("X");
                    PrintLog("stateWaitForAnswer: answer window entered and left - turn off stim and consider a miss\n");
                    
                    answerWindowStart := 0;  'reset all of the answer window variables
                    answerWindowTime := 0;
                    answerWindowWhich% := 0;
                    
                    caCountAllTrialsIncorrect% += 1;
                    docase
                    case trialType% = trialtypeAttendToward% then
                        caCountTowardTrialsIncorrect% += 1;
                        SampleText("Miss, answer window entered and left, Attend Toward",tNow);
                    case trialType% = trialtypeAttendAway% then
                        caCountAwayTrialsIncorrect% += 1;
                        SampleText("Miss, answer window entered and left, Attend Away",tNow);
                    case trialType% = trialtypeNoAttend% then
                        caCountAwayTrialsIncorrect% += 1;
                        SampleText("Miss, answer window entered and left, No Attend Direction",tNow);    
                    else
                        PrintLog("ERROR: Unknown trial type (" + str$(trialType%) + "\n");
                        SampleText("Hit, Unknown trial type",tNow);
                    endcase
                    ChangeStateTo(stateMiss%, tNow); 'go to miss penalty
                    'SafeSampleKey("a");  'advance stimulus, won't happen anywhere else
                    caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand) + caMissPenalty;
                case (iAnswer% = 1 or iAnswer% = -1) and answerWindowTime >= caAnswerWindowMin then
                    ' Got an answer. The eye has been in the response window for at least the minimum time. 
                    ' Record marker for correct/incorrect answer
                    if iAnswer% = 1 then
                        printlog("Saccade to main grating\n");
                    else
                        printlog("Saccade to distractor grating\n");
                    endif
                    
                    answerWindowStart := 0;  'reset all of the answer window variables
                    answerWindowTime := 0;
                    answerWindowWhich% := 0;
                    
                    docase
                    case trialIsGo% > 0 then  'there is a correct go response
                        SafeSampleKey("X");  'turn off stimulus first thing
                        caCountAllTrialsCorrect% += 1;
                        docase
                        case (trialTargetLoc% = 1 and iAnswer% = 1) or (trialTargetLoc% = 2 and iAnswer% = -1) then  'hit
                            docase
                            case trialType% = trialtypeAttendToward% then
                                caCountTowardTrialsCorrect% += 1;
                                SampleText("Hit, Attend Toward",tNow);
                            case trialType% = trialtypeAttendAway% then
                                caCountAwayTrialsCorrect% += 1;
                                SampleText("Hit, Attend Away",tNow);
                            case trialType% = trialtypeNoAttend% then
                                caCountAwayTrialsCorrect% += 1;
                                SampleText("Hit,  No Attend Direction",tNow);    
                            else
                                PrintLog("ERROR: Unknown trial type (" + str$(trialType%) + "\n");
                                SampleText("Hit, Unknown trial type",tNow);
                            endcase
                            Reward%();
                            ChangeStateTo(stateTrialCompletedWaitForBlank%, tNow); 
                            caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand);
                        else 'miss
                            caCountAllTrialsIncorrect% += 1;
                            docase
                            case trialType% = trialtypeAttendToward% then
                                caCountTowardTrialsIncorrect% += 1;
                                SampleText("Miss, Attend Toward",tNow);
                            case trialType% = trialtypeAttendAway% then
                                caCountAwayTrialsIncorrect% += 1;
                                SampleText("Miss, Attend Away",tNow);
                            case trialType% = trialtypeNoAttend% then
                                caCountAwayTrialsIncorrect% += 1;
                                SampleText("Miss,  No Attend Direction",tNow);    
                            else
                                PrintLog("ERROR: Unknown trial type (" + str$(trialType%) + "\n");
                                SampleText("Hit, Unknown trial type",tNow);
                            endcase
                            ChangeStateTo(stateMiss%, tNow); 'go to miss penalty
                            'SafeSampleKey("a");  'advance stimulus, won't happen anywhere else
                            caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand) + caMissPenalty;
                        endcase 
                 
                    else  'it's a NO-GO trial, and we got an answer, this is a FA
                        'stimulus will be turned off in stateAbort, do not give "X"
                        caCountAllTrialsIncorrect% += 1;
                        caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand) + caMissPenalty;
                        docase
                        case trialType% = trialtypeAttendToward% then
                            caCountTowardTrialsIncorrect% += 1;
                            SampleText("False Alarm " + GetCurrentEpoch$() + ", Attend Toward",tNow);
                        case trialType% = trialtypeAttendAway% then
                            caCountAwayTrialsIncorrect% += 1;
                            SampleText("False Alarm " + GetCurrentEpoch$() + ", Attend Away",tNow);
                        case trialType% = trialtypeNoAttend% then
                            caCountAwayTrialsIncorrect% += 1;
                            SampleText("False Alarm " + GetCurrentEpoch$() + ", No Attend Direction",tNow);
                        else
                            PrintLog("ERROR: Unknown trial type (" + str$(trialType%) + "\n");
                            SampleText("False Alarm " + GetCurrentEpoch$() + ", Unknown trial type",tNow);
                        endcase
                        'getPreciseTiming := 0;
                        FAIsResponse% := 1;
                        ChangeStateTo(stateAbort%,tNow);  
                        abortIsPostCC% := 1;
                        
                    endcase
                endcase
            endif            
            
            
            
        case iState% = stateWaitForAnswerFC% then            
            
            if tNow - tStimOn > totalStimDur then  'no response, stimulus over, at this point we don't care where the eye position is
                SafeSampleKey("X");  'turn off animation (also kills fixation point, animation is probably already off here)
                docase
                case trialResponseDirection% = 1 then 'expected response left
                    PrintLog("stateWaitForAnswer: no response on left trial, miss\n");
                    SampleText("Miss, Left Response Expected",tNow);
                    ChangeStateTo(stateMiss%, tNow); 'go to miss penalty
                    caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand) + caMissPenalty;
                    caCountLeftTrialsIncorrect% += 1;
                    'SafeSampleKey("a");  'advance stimulus, won't happen anywhere else
                case trialResponseDirection% = 3 then 'expected response right
                    PrintLog("stateWaitForAnswer: no response on right trial, miss\n");
                    SampleText("Miss, Right Response Expected",tNow);
                    ChangeStateTo(stateMiss%, tNow); 'go to miss penalty
                    caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand) + caMissPenalty;
                    caCountRightTrialsIncorrect% += 1;
                    'SafeSampleKey("a");  'advance stimulus, won't happen anywhere else
                case trialResponseDirection% = 0 then 'expected no response, correct rejection
                    PrintLog("stateWaitForAnswer: no response on no-target trial, correct rejection\n");
                    SampleText("Correct Rejection, No Response Expected",tNow);
                    caCountAllTrialsCorrect% += 1;
                    caCountNontargetTrialsCorrect% += 1;
                    caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand);
                    Reward%();
                    ChangeStateTo(stateTrialCompletedWaitForBlank%, tNow); 
                endcase;
            else
                'Stimulus is still on, response window is still open...
                iAnswer% := Answer%(JoyChannel%,tNow);  'get answer
                joystickInStartPosition% := JoyInStartPosition%(iAnswer%);
                docase
                case Looking%(xEye, yEye) = 0 and caRequireFixation% = 1 and caAllowFixationBreakAfterCC% = 0 then  'if fixation broken, abort
                    SafeSampleKey("s");
                    SampleText("Fixation broken during response window",tNow);
                    PrintLog("stateWaitForAnswer: fix broken - turn off stim\n");
                    ChangeStateTo(stateAbort%, tNow);
                    abortIsPostCC% := 1;
                case joystickInStartPosition% = 0 then  'for image cue response training
                    ' Got an answer. Record marker for correct/incorrect answer
                    if iAnswer% = JSRight% then
                        printlog("Response Right\n");
                        joystickHasBeenCentered% := 0;  'joystick not centered
                    else
                        printlog("Response Left\n");
                        joystickHasBeenCentered% := 0;  'joystick not centered
                    endif
                    SafeSampleKey("X");  'turn off stimulus first thing
                    'printlog("trialResponseDirection is %d\n",trialResponseDirection%);  'just for testing
                    docase
                    case iAnswer% = JSRight% and trialResponseDirection% = 3 then  'right expected, response to right
                        caCountAllTrialsCorrect% += 1;
                        caCountRightTrialsCorrect% += 1;
                        caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand);
                        SampleText("Hit, Right",tNow);
                        'getPreciseTiming := 0;
                        Reward%();
                        ChangeStateTo(stateTrialCompletedWaitForBlank%, tNow); 
                    case iAnswer% = JSLeft% and trialResponseDirection% = 1 then 'left expected, response to left
                        caCountAllTrialsCorrect% += 1;
                        caCountLeftTrialsCorrect% += 1;
                        caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand);
                        SampleText("Hit, Left",tNow);
                        'getPreciseTiming := 0;
                        Reward%();
                        ChangeStateTo(stateTrialCompletedWaitForBlank%, tNow); 
                    case iAnswer% = JSLeft% and trialResponseDirection% = 3 then 'right expected, response to left
                        caCountAllTrialsIncorrect% += 1;
                        caCountRightTrialsIncorrect% += 1;
                        caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand) + caMissPenalty;
                        SampleText("Miss, Response Left, Expected Response Right",tNow);
                        ChangeStateTo(stateTrialCompletedWaitForBlank%, tNow);
                    case iAnswer% = JSRight% and trialResponseDirection% = 1 then 'left expected, response to right
                        caCountAllTrialsIncorrect% += 1;
                        caCountLeftTrialsIncorrect% += 1;
                        caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand) + caMissPenalty;
                        SampleText("Miss, Response Right, Expected Response Left",tNow);
                        ChangeStateTo(stateTrialCompletedWaitForBlank%, tNow);
                    case iAnswer% = JSLeft% and trialResponseDirection% = 0 then 'no response expected, response to left
                        caCountAllTrialsIncorrect% += 1;
                        caCountNontargetTrialsIncorrect% += 1;
                        caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand) + caMissPenalty;
                        SampleText("False Alarm " + GetCurrentEpoch$() + ", Response Left, Expected No Response",tNow);
                        ChangeStateTo(stateTrialCompletedWaitForBlank%, tNow);
                    case iAnswer% = JSRight% and trialResponseDirection% = 0 then 'no response expected, response to right
                        caCountAllTrialsIncorrect% += 1;
                        caCountNontargetTrialsIncorrect% += 1;
                        caInterTrialTime2 := GetInterTrialTime(caInterTrialTime,caInterTrialTimeRand) + caMissPenalty;
                        SampleText("False Alarm " + GetCurrentEpoch$() + ", Response Right, Expected No Response",tNow);
                        ChangeStateTo(stateTrialCompletedWaitForBlank%, tNow); 
                    endcase
                endcase                
            endif;
            
 
            
        case iState% = stateTrialCompletedWaitForBlank% then
            
            ' we just wait for fix point off signal in this case. 
            tTrigger := View(DataWindow%).NextTime(FixationPointChannel%, tLastTrigger, vTrigger);
            if tTrigger > tLastTrigger then
                ' Fixation point is off
                PrintLog("stateTrialCompleteWaitForBlank: Fix pt is off.\n");
                tLastTrigger := tTrigger;
                
                ChangeStateTo(stateTrialCompletedPause%, tTrigger);
                if caRequireFixation% <> 0 then
                    DrawStim(0);	' this undraws the location of the fixpt.
                endif;
            endif
            
            
            
        case iState% = stateMiss% then
            
            'If joystick has not been centered, allow any centering here to count
            if joystickHasBeenCentered% = 0 and caRequireSaccadeResponse% = 0 then 'don't bother if we are using saccade response
                tempanswer% := Answer%(JoyChannel%,tNow);
                'printlog("Joystick is in position %d\n",tempanswer% );
                if tempanswer% = JSCenter% then
                    joystickHasBeenCentered% := 1;
                endif
            endif
            
            if tNow - tStateStart > caInterTrialTime2 then  'ITI includes miss penalty
                
                PrintLog("stateMiss: penalty time is done.\n");
                ChangeStateTo(stateTrialCompleted%, tNow);
                
            endif
            
        case iState% = stateTrainingWait% then
            if tNow - tStateStart > caFixAlternationTime then
                
                PrintLog("stateTrainingWait: 'fixation off' time done.\n");
                ChangeStateTo(stateTrialCompleted%, tNow);
                
            endif 
            
            
        case iState% = stateTrialCompletedPause% then
            'The time that the program stays in this state is the caInterTrialTime plus any miss penalty, if applicable
            
            'during the pause, check for administering withheld reward
            if rewardWithheld% = 1 then
                tempanswer% := Answer%(JoyChannel%,tNow);
                if tempanswer% = JSCenter% then  'if joystick is in center
                    Reward%();  'Give reward now that joystick is in center
                    rewardWithheld% := 0;  'reset
                endif;  
            endif;
            
            'check to see if pause is over
            if tNow - tStateStart > caInterTrialTime2 then  
                
                PrintLog("stateTrialCompletedPause: inter-trial time is done.\n");
                ChangeStateTo(stateTrialCompleted%, tNow);
                
            endif        
            
            
        case iState% = stateTrialCompleted% then
            if caTrainingOptions% > 2 then
                'No answer windows in this joystick scenario
                view(XYWindow%).XYColour(iAnswerWindowChannelMain%,13);  'Force main answer window to blue
                view(XYWindow%).XYColour(iAnswerWindowChannelDist1%,13);  'Force distracter1 answer window to blue
                view(XYWindow%).XYColour(iFixationWindowChannel%,13);  'Force fixation window to blue
            endif;
            
            PrintLog("Trial #%d completed.\n",caCurrTrialIndex%+1);
            SampleText("End Trial "+Str$(caCurrTrialIndex%+1),tNow);
            'advance
            SafeSampleKey("a");
            nTrialsCompleted% += 1;
            caCurrTrialIndex% += 1;
            if caTrainingOptions% > 2 then 'note that if this is a "hog", we can find a way to update only when the window actually changes
                UpdateOnScreenPositions();  'with trial advanced, update locations of fixpt/stimuli if they might change
            endif;
            if nTrialsCompleted% = caNumberOfTrials% then
                Stop%();
                iStatus% := 0;
            else
                ChangeStateTo(stateCheckForTemplateAdvance%, tNow);
            endif;
            
            
            
            
            
            
        'These two states will allow us to do the "same" thing in multiple places.  There are plenty of instances of sending
        'a Unic command - we can confirm the command with these states, and then change to StateNext% once finished.
        'Please note that EVERY TIME before changing to stateUnicCommandWait you must set stateNext%, so making a new
        'function (CheckUnicChangeStateTo) makes sense.
            
        case iState% = stateUnicCommandWait% then
            
            ' Waiting for Unic to indicate it is ready. The indication is a pulse (up, then down, 1 frame apart) on port 6.
            tTrigger := View(DataWindow%).NextTime(unicCommandSuccessChannel%, tLastTrigger, vTrigger);
            if tTrigger > tLastTrigger and vTrigger = 0 then
                PrintLog("state stateUnicCommandWait: Got leading edge of trigger\n");
                tLastTrigger := tTrigger;
                ChangeStateTo(stateUnicCommandConfirm%, tTrigger);
                nextStateImmed% := 1;
            endif;
            
            
        case iState% = stateUnicCommandConfirm% then
            
            ' Waiting for Unic to confirm it is ready. The downward side of the pulse is expected...
            tTrigger := View(DataWindow%).NextTime(unicCommandSuccessChannel%, tLastTrigger, vTrigger);
            if tTrigger > tLastTrigger and vTrigger = 1 then
                PrintLog("state stateUnicCommandConfirm: Got trailing edge of trigger\n");
                tLastTrigger := tTrigger;
                tLastTemplateTime := tTrigger;
                ChangeStateTo(stateNext%, tTrigger); 'Go to the next specified state
                nextStateImmed% := 1;
            endif;            
            
            
        else
            
            ' Unknown state!
            'If the eyetracker is recording an output file, stop recording and close the file
            if RecordEyeTrackerOutputFile% = 1 then
                SafeSampleKey("w");  'Stop recording
                yield(0.1);
                SafeSampleKey("i");  'Close the file
                SafeSampleKey("Z");  'zero the DIGLOWs
            endif
            Message("Unknown state=" + str$(iState%));
            halt;
            
        endcase;
         
        tLast := tNow;
        
    wend;
    
    return iStatus%;
end;





''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Looking%(EyePosX,EyePosY)
	'Determine if the eye position is within the fixation window
	if (Pow(EyePosX-FixationX,2) + Pow(EyePosY-FixationY,2)) <= Pow(WindowRadius,2) then return 1; else return 0; endif
end;

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Reward%()
    DefaultReward();
    'No sample text, just use 'R' from keyboard channel
	return 1;
end;

'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func PauseStimuli%();
    Pause% :=1;
    ToolbarEnable(3,0);
    ToolbarEnable(4,1);
    return 1;
end
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func ResumeStimuli%();
    Pause% :=0;
    ToolbarEnable(3,1);
    ToolbarEnable(4,0);
    return 1;
end

'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc ChangeStateTo(stateTo%, tStart)
	iState% := stateTo%;
	if tStart > 0 then tStateStart := tStart; endif;
end;

'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc CheckUnicChangeStateTo(stateTo%, tStart)
    stateNext% := stateTo%;
	iState% := stateUnicCommandWait%;
	if tStart > 0 then tStateStart := tStart; endif;
end;

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' ParseGratingParametersBrief%(gr$, &x, &y, &w, &h);
' 
' Given a grating parameter list, parse the individual values in to the given variable list. 
' Simpler version than the full-blown one, as it doesn't return all values. 
' This version will work for all possible variable list lengths - with/without phase/cv/pattern/aperture/inner/outer
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''


'func ParseGratingParametersBrief%(gr$, &x, &y, &w, &h)
'    var status% := 0;
'    var n%;
'	ReadSetup("", "", "", "", ",");
'	n% := ReadStr(gr$, x, y, w, h);
'    ReadSetup();
'    if n% <> 4 then status% := -1; endif;
'    return n%;
'end
'
'
'' Get grating p[arameters from registry AlertRig\\(config)\\Gratings\\type$
'func GetGratingParameters$(type$)
'	var key$;
'	var stmp$;
'	key$ := "AlertRig\\" + GetCurrentConfiguration$() + "\\Gratings";
'	stmp$ := GetStringRegistryValue$(key$, type$, "");
'	return stmp$;
'end;



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' UpdateToolbarText - Print tallies of trials in toolbar
'

proc UpdateToolbarText()
    
	var s$;
	var allpct$ := "--";
	var towpct$ := "--";
    var awapct$ := "--";
    var ntpct$ := "--";
    var num, den, pct;
    
    if (caCountAllTrials% > 0) then
        num := caCountAllTrialsCorrect%;
        den := caCountAllTrials%;
        pct := num/den*100;
        allpct$ := print$("%2.0f", pct);
    endif
    if caTrainingOptions% <= 4 then 'GNG
        if (caCountTowardTrials% > 0) then
            num := caCountTowardTrialsCorrect%;
            den := caCountTowardTrials%;
            pct := num/den*100;
            towpct$ := print$("%2.0f", pct);
        endif
        if (caCountAwayTrials% > 0) then
            num := caCountAwayTrialsCorrect%;
            den := caCountAwayTrials%;
            pct := num/den*100;
            awapct$ := print$("%2.0f", pct);
        endif
        s$ := Print$("Tallies count/correct/incorrect/aborted (correct%%): ALL %d/%d/%d/%d (%s%%) TOWARD %d/%d/%d/%d (%s%%) AWAY %d/%d/%d/%d (%s%%)", 
        caCountAllTrials%, caCountAllTrialsCorrect%, caCountAllTrialsIncorrect%, caCountAllTrialsAbort%, allpct$,
        caCountTowardTrials%, caCountTowardTrialsCorrect%, caCountTowardTrialsIncorrect%, caCountTowardTrialsAbort%, towpct$,
        caCountAwayTrials%, caCountAwayTrialsCorrect%, caCountAwayTrialsIncorrect%, caCountAwayTrialsAbort%, awapct$);
    else  'forced choice, using some "away/toward" variables to avoid creating new variables
        if (caCountLeftTrials% > 0) then
            num := caCountLeftTrialsCorrect%;
            den := caCountLeftTrials%;
            pct := num/den*100;
            towpct$ := print$("%2.0f", pct);
        endif
        if (caCountRightTrials% > 0) then
            num := caCountRightTrialsCorrect%;
            den := caCountRightTrials%;
            pct := num/den*100;
            awapct$ := print$("%2.0f", pct);
        endif
        if (caCountNontargetTrials% > 0) then
            num := caCountNontargetTrialsCorrect%;
            den := caCountNontargetTrials%;
            pct := num/den*100;
            ntpct$ := print$("%2.0f", pct);
        endif
        s$ := Print$("Tallies count/correct/incorrect/aborted (correct%%): ALL %d/%d/%d/%d (%s%%) LEFT %d/%d/%d/%d (%s%%) RIGHT %d/%d/%d/%d (%s%%)", 
        caCountAllTrials%, caCountAllTrialsCorrect%, caCountAllTrialsIncorrect%, caCountAllTrialsAbort%, allpct$,
        caCountLeftTrials%, caCountLeftTrialsCorrect%, caCountLeftTrialsIncorrect%, caCountLeftTrialsAbort%, towpct$,
        caCountRightTrials%, caCountRightTrialsCorrect%, caCountRightTrialsIncorrect%, caCountRightTrialsAbort%, awapct$);
        'only note nontargets if they exist
        if (caCountNontargetTrials% > 0) then
            s$ := s$ + Print$(" NONTARGET %d/%d/%d/%d (%s%%)",
            caCountNontargetTrials%, caCountNontargetTrialsCorrect%, caCountNontargetTrialsIncorrect%, caCountNontargetTrialsAbort%, ntpct$);
        endif;
    endif;
    
    
	ToolbarText(s$);
    
end;



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc WriteParameterFile()
	var parFileName$;
	var parFileBase$;
	var parHandle%;
    var tempPrimary$;
    var tempSecondary$;
    
	' get filename for parfile (data file + "par" extension) and open it
	View(DataWindow%);
	parFileBase$ := FileName$(1) + FileName$(2) + FileName$(3) + FileName$(4);
	parFileName$ := parFileBase$ + ".par";
	PrintLog("par filename is " + parFileName$ + "\n");
	parHandle% := FileOpen(parFileName$, 8, 1);
    
	' write general info - eye coil gains, dist to screen
	Print("Tuning parameters for %s\n\n", parFileBase$);
    
	Print("General information\n");
	Print("-------------------\n\n");
	Print("Distance to screen (MM)    : %s\n", GetDistanceToScreenMM$());
	Print("Eye coil software gain (X) : %f\n", DegreesPerVoltX);
	Print("Eye coil software gain (Y) : %f\n", DegreesPerVoltY);
    Print("Eye coil offset, V (X)     : %f\n", XVoltOffset);
    Print("Eye coil offset, V (Y)     : %f\n", YVoltOffset);
	Print("Eye coil sampling freq (Hz): %d\n", EyeCoilSamplingFrequency%);
    Print("Wavemark ports             : %s\n", GetWavemarkPorts$());
    Print("Continuous ports           : %s\n", GetContinuousPorts$());
	Print("Reward size (ms)           : %d\n", GetJuiceRewardMS%());
	'Print("Background color           : %s\n", tunBackgroundColor$);
    
    
    if caTrainingOptions% > 2 then 'this is the input file, parameters are in the input file
        
        Print("Input file                 : %s\n", specFileName$);
        
    endif;
        
    'write parameters from registry
    
    ' write fixpoint parameters
    Print("\nFixation point\n");
    Print("-------------------\n\n");
    Print("Window radius              : %f\n", WindowRadius);
    Print("Position (x, degrees)      : %f\n", FixationX);
    Print("Position (y, degrees)      : %f\n", FixationY);
    Print("Diameter (degrees)         : %f\n", FixationDiameter);
    Print("Color                      : %s\n", FixationColor$);
    
    ' write stimulus parameters
    var Tstimstr$;
    var Tstimx$, Tstimy$, Tstimw$, Tstimh$, Tstimiw$, Tstimih$, Tstimcontrast$, Tstimsf$, Tstimtf$, Tstimorientation$, Tstimphase$, Tstimcv$, Tstimp$, Tstimap$;
    var i%;
    var Tstepsize;
    var phase;
    Print("\nStimulus\n");  'Master grating
    Print("-------------------\n\n");
    Tstimstr$ := GetGratingParameters$("Stimulus");
    ReadSetup(",",",",",",",",",");
    i% := ReadStr(Tstimstr$, Tstimx$, Tstimy$, Tstimw$, Tstimh$, Tstimiw$, Tstimih$, Tstimcontrast$, Tstimsf$, Tstimtf$, Tstimorientation$, Tstimphase$, Tstimcv$, Tstimp$, Tstimap$);
    Print("Position (x, degrees)           : %s\n", Tstimx$);
    Print("Position (y, degrees)           : %s\n", Tstimy$);
    Print("Width (degrees)                 : %s\n", Tstimw$);
    Print("Height (degrees)                : %s\n", Tstimh$);
    Print("Inner Width (degrees)           : %s\n", Tstimiw$);
    Print("Inner Height (degrees)          : %s\n", Tstimih$);
    Print("Color: b/w(b),lms-cone(l,m,s)   : %s\n", Tstimcv$);
    Print("Temporal frequency              : %s\n", Tstimtf$);
    Print("Spatial frequency               : %s\n", Tstimsf$);
    Print("Orientation (degrees)           : %s\n", Tstimorientation$);
    Print("Initial Phase (degrees)         : %f\n", phase);
    Print("Contrast (%%)                    : %s\n", Tstimcontrast$);
    Print("Aperture: ellipse(e)/square(q)  : %s\n", Tstimap$);
    Print("Type: sine (s)/square (q)       : %s\n", Tstimp$);
    
    ' write distractor parameters
    
    Print("\nDistractor1\n");  'Distractor grating
    Print("-------------------\n\n");
    Tstimstr$ := GetGratingParameters$("Distractor1");
    ReadSetup(",",",",",",",",",");
    i% := ReadStr(Tstimstr$, Tstimx$, Tstimy$, Tstimw$, Tstimh$, Tstimiw$, Tstimih$, Tstimcontrast$, Tstimsf$, Tstimtf$, Tstimorientation$, Tstimphase$, Tstimcv$, Tstimp$, Tstimap$);
    Print("Position (x, degrees)           : %s\n", Tstimx$);
    Print("Position (y, degrees)           : %s\n", Tstimy$);
    Print("Width (degrees)                 : %s\n", Tstimw$);
    Print("Height (degrees)                : %s\n", Tstimh$);
    Print("Inner Width (degrees)           : %s\n", Tstimiw$);
    Print("Inner Height (degrees)          : %s\n", Tstimih$);
    Print("Color: b/w(b),lms-cone(l,m,s)   : %s\n", Tstimcv$);
    Print("Temporal frequency              : %s\n", Tstimtf$);
    Print("Spatial frequency               : %s\n", Tstimsf$);
    Print("Orientation (degrees)           : %s\n", Tstimorientation$);
    Print("Initial Phase (degrees)         : %f\n", phase);
    Print("Contrast (%%)                    : %s\n", Tstimcontrast$);
    Print("Aperture: ellipse(e)/square(q)  : %s\n", Tstimap$);
    Print("Type: sine (s)/square (q)       : %s\n", Tstimp$);
    
    
    
    
    
	Print("\nExperimental parameters\n");
	Print("-------------------------\n\n");
    
    
    
	Print("Acquisition time (s)   : %f\n", caAcquisitionTime);
    Print("Intertrial time (s)   : %f\n", caInterTrialTime);
    Print("Random Intertrial time (s)   : %f\n", caInterTrialTimeRand);
    Print("Abort penalty time (s)   : %f\n", caAbortWaitTime);
    Print("Abort penalty time (post-CC) (s)   : %f\n", caAbort2WaitTime);
    Print("False Alarm penalty time (s)   : %f\n", caFalseAlarmWaitTime);
    Print("False Alarm check window (s)   : %f\n", caFalseAlarmCheckWindow);
    Print("Miss penalty time (s)   : %f\n", caMissPenalty);
    Print("Training options selected   : %d\n", caTrainingOptions%);
    Print("Time to hold for reward   : %f\n", caTrainingHoldTime);
    Print("FixPt alternation time   : %f\n", caFixAlternationTime);
    Print("Fixation required   : %d\n", caRequireFixation%);
    
    
    Print("\n");
    
	' close parfile
	FileClose(0);
    
end;



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc PrepareTrial()
    
     
    
	PrintLog("Prepare trial: ");
    
    if caTrainingOptions% > 2 then
        if inputStyle% = 0 then
            trialEarlyGoTime := caAlternateGoTime[caCurrTrialIndex%];  'Early go time
            trialHazardFunctionTime := caEpoch2[caCurrTrialIndex%];  'hazard time has been pre-calculated
            totalStimDur := caStimOff[caCurrTrialIndex%];  'There is no epoch3, so use StimOff
        else
            'we will not use trial early go time
            trialEarlyGoTime := -1;  'just define it as -1, will be ignored later
            docase
            case caAlternateGoTime[caCurrTrialIndex%] = -1 then
                trialHazardFunctionTime := caEpoch1[caCurrTrialIndex%];
                totalStimDur := caEpoch2[caCurrTrialIndex%];  'Instead of using StimOff, use Epoch 2 - for this Epochs 2/3/4 will not happen because either response or end of response window will turn off stim
            case caAlternateGoTime[caCurrTrialIndex%] = -2 then
                trialHazardFunctionTime := caEpoch2[caCurrTrialIndex%];
                totalStimDur := caEpoch3[caCurrTrialIndex%];  'Instead of using StimOff, use Epoch 3 - for this Epochs 3/4 will not happen because either response or end of response window will turn off stim
            case caAlternateGoTime[caCurrTrialIndex%] = -3 then
                trialHazardFunctionTime := caEpoch3[caCurrTrialIndex%];
                totalStimDur := caEpoch4[caCurrTrialIndex%];  'Instead of using StimOff, use Epoch 4 - for this Epoch 4 will not happen because either response or end of response window will turn off stim
            case caAlternateGoTime[caCurrTrialIndex%] = -4 then
                trialHazardFunctionTime := caEpoch4[caCurrTrialIndex%];
                totalStimDur := caStimOff[caCurrTrialIndex%];  'Use StimOff is Epoch 4 is response window
            case caAlternateGoTime[caCurrTrialIndex%] > 0 then
                trialHazardFunctionTime := caAlternateGoTime[caCurrTrialIndex%];
                totalStimDur := caStimOff[caCurrTrialIndex%];  'If there is an alternate go time, use StimOff for end of response window, because what else??
            else
                message("Time of allowed response not properly defined!  Using epoch 2, but you should quit and fix it!");
                trialHazardFunctionTime := caEpoch2[caCurrTrialIndex%];
                totalStimDur := caEpoch3[caCurrTrialIndex%];  'Instead of using StimOff, use Epoch 3 - for this Epochs 3/4 will not happen because either response or end of response window will turn off stim
            endcase
        endif;
        
          
        'totalStimDur := caStimOff[caCurrTrialIndex%];  'stimulus duration has been pre-calculated, this is now determined for each possible Go Time individually
        trialCueName$ := caCueFile$[caCurrTrialIndex%];  'name of trial cue
        'cut out the directory structure, because it makes the sample text unreadable in real time
        'this doesn't work because Spike2 SIMPLY CAN'T SEE the backslash.
        while instr(trialCueName$,"\\") > 0 do
            trialCueName$ := right$(trialCueName$,len(trialCueName$)-instr(trialCueName$,"\\"));
        wend
        
        'if trialEarlyGoTime should be ignored, set it to later than the trial end and forget it
        if trialEarlyGoTime <= 0 or trialEarlyGoTime > trialHazardFunctionTime or inputStyle% = 1 then
            trialEarlyGoTime := trialHazardFunctionTime+caStimOff[caCurrTrialIndex%];
        endif;
        'determine if this is an attend-toward or attend-away trial
        if caTrainingOptions% <> 5 then  'go/no-go
            docase
            case caAttendLoc%[caCurrTrialIndex%] = 1 then
                trialType% := trialtypeAttendToward%;
                trialAttendLoc% := 1;
            case caAttendLoc%[caCurrTrialIndex%] = 2 then
                trialType% := trialtypeAttendAway%;
                trialAttendLoc% := 2;
            else
                trialType% := trialtypeNoAttend%;
                trialAttendLoc% := 0;
            endcase
            printlog("Trial Type is %d\n",trialType%);
        else 'forced choice
            trialResponseDirection% := caAttendLoc%[caCurrTrialIndex%];  'use trialResponseDirection% to hold required direction
        endif
        
        'Assign trial target location, if no location changes this will be 0
        trialTargetLoc% := caWhichLocationChanges%[caCurrTrialIndex%];
        
        'Assign whether this is a "go" trial or not
        docase
        case inputStyle% = 1 then  'all trials are go trials for four-epoch input files (at least for now!)
            trialIsGo% := 1;  
        case caTrainingOptions% <> 3 then  'if caTrainingOptions is not 3, the animal is supposed to detect all contrast changes, even at the uncued location
            if trialTargetLoc% > 0 then
                trialIsGo% := 1;
            else
                trialIsGo% := 0;
            endif;
        else 'if caTrainingOptions is 3, the animal is supposed to ignore contrast changes at the uncued location
            if trialTargetLoc% > 0 then  'if there is a contrast change
                if trialTargetLoc% = trialAttendLoc% then 'if the contrast change is at the cued location
                    trialIsGo% := 1; 'this is a go trial
                else 'if the contrast change is at the uncued location (remember, caTrainingOptions = 3 only)
                    trialIsGo% := 0;  'this is a no-go trial
                endif;
            else  'if there is no contrast change, this is a no-go trial
                trialIsGo% := 0;
            endif;
        endcase;
        
            
        
        
        'Record actual contrast level on this trial
        docase
        case inputStyle% = 1 then
            thisContrast% := -1;  'For four-epoch input files, for now punt this...we can fix it later if necessary, not sure how to do it right now
        case caWhichLocationChanges%[caCurrTrialIndex%] = 1 then
            thisContrast% := caContrast1Final[caCurrTrialIndex%]; 
        case caWhichLocationChanges%[caCurrTrialIndex%] = 2 then
            thisContrast% := caContrast2Final[caCurrTrialIndex%]; 
        endcase;
        
        'determine if it's a catch trial
        docase
        case inputStyle% = 1 then
            trialCatch% := 0;
        case caWhichLocationChanges%[caCurrTrialIndex%] = 1 and caAttendLoc%[caCurrTrialIndex%] = 1 then
            trialCatch% := 0;
        case caWhichLocationChanges%[caCurrTrialIndex%] = 2 and caAttendLoc%[caCurrTrialIndex%] = 2 then
            trialCatch% := 0;
        case caWhichLocationChanges%[caCurrTrialIndex%] = 1 and caAttendLoc%[caCurrTrialIndex%] = 2 then
            trialCatch% := 1;    
        case caWhichLocationChanges%[caCurrTrialIndex%] = 2 and caAttendLoc%[caCurrTrialIndex%] = 1 then
            trialCatch% := 1;
        case caWhichLocationChanges%[caCurrTrialIndex%] = 0 then  'this would be a no-change trial
            trialCatch% := -1;
        else  'this would be a no-attend trial, but since it changes I guess it can't be a catch
            trialCatch% := 0;
        endcase
        
        
    endif
    
end



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' DrawStim
' 
' Draws stimulus in xy window (iDraw%==1) or blanks it (0). 
proc DrawStim(iDraw%)
    
	if iDraw% > 0 then
		var xstim, ystim;
		xstim := FixationX;
		ystim := FixationY;
        
		' Draw stimulus in xy window
		View(XYWindow%).XYAddData(iStimChannel%, xstim, ystim);
	else 
		' erase the stim and the window from xy view
		View(XYWindow%).XYDelete(iStimChannel%);
	endif
    
end;



''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'Change this so it reads the joystick
func Answer%(chan%,now)
    var ans% := -1;
    var v;
    'v := ChanValue(chan%,now);
    'printlog("voltage is %f\n",v);
    if ChanKind(chan%) > 0 then  'if the channel does not exist, return 0
        ans% := GetJoystickPositionX%(v);   
    else
        ans% := 0;
    endif;
        
    
    if ans% = -1 then
        printlog("There has been an error in reading the joystick!  GetJoystickPositionX% has returned -1!\n");
    endif
    
    
	return ans%;
    
    'This function will return:
    'JSLeft% if joystick is left
    'JSCenter% if joystick is center
    'JSRight% if joystick is right
    '0 if joystick is in undefined position
    '-1 on error
end;


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'This is the same function normally referred to as "Answer%()" but since for this script that was changed to a joystick
'function, here we will call it EyeAnswer%()
func EyeAnswer%(EyePosX, EyePosY)
    var ans% := 0;
    docase
    case (Pow(EyePosX-mainX,2) + Pow(EyePosY-(mainY),2)) <= Pow(mainW,2) then 'Looking at main grating location, just assuming mainW = mainH!
        ans% := 1;
    case (Pow(EyePosX-dist1X,2) + Pow(EyePosY-(dist1Y),2)) <= Pow(dist1W,2) then 'Looking at distracter 1 location, just assuming dist1W = dist1H!
        ans% := -1;
    endcase;
    
	return ans%;
end;



'This will calculate an intertrial time that has both a constant and random component
'Super easy but better than doing it inline
func GetInterTrialTime(kTime,rTime)
    var addTime;
    addTime := rand(rTime,0);
    return addTime + kTime;
end;




'This function decides whether the joystick is in the start position
func JoyInStartPosition%(pos%)
    var sp%;
    docase
    case caRequireSaccadeResponse% then 'during Require Saccade Response scenarios the joystick is absent, by default return 1 as if "joystick" is "ready"
        sp% := 1;
    case caTrainingOptions% <= 4 and pos% = JSRight% then  'For all "regular" experiments (GNG), the start position is "right"
        sp% := 1;
    case caTrainingOptions% = 5 and pos% = JSCenter% then  'For cue image forced choice experiments, the start position is "center"
        sp% := 1
    'case pos% = 0 then  'there are no "intermediate positions" as of 1/2/24 -jj
    '    sp% := 1;  'If the joystick is in an "intermediate position" just call that "still in start position"
    else  'anything that does not trigger any of the above conditions is not in the start position
        sp% := 0;
    endcase
    return sp%;
end




'This function allows us to update the onscreen position of fixation and stimulus windows, as well as values for eye position windows
'Note that there is no point to running this function if caTrainingOptions% is not 3 or higher (= control file) because the position
'of the stimuli would not change
proc UpdateOnScreenPositions()
    var index%;
    var twopi;
    twopi := 2.0*4.0*ATan(1.0);
    var trash;  'Explained below 
    
    printlog("Updating on-screen windows, eye position windows\n");
    
    '***Update fixation point window - this should hopefully be fast
    '***Note that updating this will also affect Looking%()
    'Update fixpt parameters
    if b1$[caCurrTrialIndex%] = "" then 'this trial uses the fixation point from the dialogs
        'Get default fixpt parameters
        GetFixationPointParameters();    'fills FixationX,FixationY,FixationColor$,FixationDiameter, WindowRadius
    else 'this trial uses a custom fixation point specified in the control file
        'Get fixpt parameters for this trial
        'There is an extra argument in the call to ParseGratingParametersBrief(), "trash" will return 0 because
        'the function expects to read a number, not a string.  However, we don't need to know the value of the
        'string (it holds the color of the fixation point) because we never use it.  Also, FixationDiameter will
        'not be used, but since we CAN read it, we ought to.
        ParseGratingParametersBrief%(caFileFixParams$[caCurrTrialIndex%],FixationX,FixationY,FixationDiameter,trash);
    endif;
    'Recalcuate the fixation window regardless
    for index% := 0 to 35 do
        FixWindowX[index%] := FixationX + WindowRadius * Cos(index% * twopi/36.0);
        FixWindowY[index%] := FixationY + WindowRadius * Sin(index% * twopi/36.0);
    next;
    'Delete the old fixation window data regardless
    View(XYWindow%).XYDelete(iFixationWindowChannel%);
    'Redraw current fixation window data regardless
    View(XYWindow%).XYAddData(iFixationWindowChannel%, FixWindowX[], FixWindowY[]);
    
    
    '***Do the same thing for both stimuli
    
    'Update stimulus 1 parameters
    if b2$[caCurrTrialIndex%] = "" then 'this trial uses the fixation point from the dialogs
        'Get default stim1 parameters
        ParseGratingParametersBrief%(GetGratingParameters$("Stimulus"),mainX,mainY,mainW,mainH); 
    else 'this trial uses a custom fixation point specified in the control file
        'Get stim1 parameters for this trial
        ParseGratingParametersBrief%(caFileGrating1Params$[caCurrTrialIndex%],mainX,mainY,mainW,mainH);
    endif;
    'change window radius
    mainW := mainW + caAdditionalWindowRadius;
    mainH := mainH + caAdditionalWindowRadius;
    'Recalcuate the fixation window regardless
    for index% := 0 to 35 do
        FixWindowX[index%] := mainX + mainW * Cos(index% * twopi/36.0);
        FixWindowY[index%] := mainY + mainH * Sin(index% * twopi/36.0);
    next;
    'Delete the old fixation window data regardless
    View(XYWindow%).XYDelete(iAnswerWindowChannelMain%);
    'Redraw current fixation window data regardless
    View(XYWindow%).XYAddData(iAnswerWindowChannelMain%, FixWindowX[], FixWindowY[]);
     
    
    'Update stimulus 2 parameters
    if b3$[caCurrTrialIndex%] = "" then 'this trial uses the fixation point from the dialogs
        'Get default stim2 parameters
        ParseGratingParametersBrief%(GetGratingParameters$("Distractor1"),dist1X,dist1Y,dist1W,dist1H); 
    else 'this trial uses a custom fixation point specified in the control file
        'Get stim1 parameters for this trial
        ParseGratingParametersBrief%(caFileGrating2Params$[caCurrTrialIndex%],dist1X,dist1Y,dist1W,dist1H);
    endif;
    'change window radius
    dist1W := dist1W + caAdditionalWindowRadius;
    dist1H := dist1H + caAdditionalWindowRadius;
    'Recalcuate the fixation window regardless
    for index% := 0 to 35 do
        FixWindowX[index%] := dist1X + dist1W * Cos(index% * twopi/36.0);
        FixWindowY[index%] := dist1Y + dist1H * Sin(index% * twopi/36.0);
    next;
    'Delete the old fixation window data regardless
    View(XYWindow%).XYDelete(iAnswerWindowChannelDist1%);
    'Redraw current fixation window data regardless
    View(XYWindow%).XYAddData(iAnswerWindowChannelDist1%, FixWindowX[], FixWindowY[]);
       
    
end


'This function simply increments the 8 bit trial counters.  Note that bit2 is the first incremented, so that count goes
'[0 0], [0 1], [0 2]...[0 255], [1 0], [1 1]...
proc Increment8bitTrialCount()
    trialCount8bit2% += 1;  'increment bit2
    if trialCount8bit2% = 256 then  'if bit2 has exceeded the max
        trialCount8bit2% := 0;  'flip bit2 to zero
        trialCount8bit1% += 1;  'increment bit1
        if trialCount8bit1% = 256 then  'if bit1 has exceeded the max, this really would be extreme barring a coding error
            trialCount8bit1% := 0;  'flip bit1 to zero, because what else can you do?
            'And give warning
            message("The bit counter has flipped!\nEither you have run 65537 recordings or there is a coding error!\nContinuing!");
        endif;
    endif;
end


'This function returns a text output corresponding to the current epoch, useful for sampletexting
func GetCurrentEpoch$()
    var outString$ := "Error in GetCurrentEpoch!";  'if we don't assign below, will return a string indicating an error (that shouldn't ever happen, but...just in case...)
    'if there is an input file, use epoch times to determine which epoch (there should ALWAYS be an input file if this function is called)
    if caTrainingOptions% > 2 then
        if inputStyle% = 0 then 'if there are two epochs
            docase
            case tNow-tTrialStart < trialHazardFunctionTime and tNow < trialEarlyGoTime then
                outString$ := " before contrast change";
            case tNow-tTrialStart < trialHazardFunctionTime and tNow > trialEarlyGoTime then
                outString$ := " during early go window";
            else
                outString$ := " after contrast change";  'this probably won't ever happen because we won't call this function on hits...
            endcase
        else
            docase
'            case tNow-tTrialStart > trialHazardFunctionTime then  'this probably won't ever happen because we won't call this function on hits...
'                outString$ := " during response window";
            case tNow-tTrialStart < caEpoch1[caCurrTrialIndex%] then
                outString$ := " before epoch 1";
            case tNow-tTrialStart < caEpoch2[caCurrTrialIndex%] then
                outString$ := " during epoch 1";   
            case tNow-tTrialStart < caEpoch3[caCurrTrialIndex%] then
                outString$ := " during epoch 2"; 
            case tNow-tTrialStart < caEpoch4[caCurrTrialIndex%] then
                outString$ := " during epoch 3";
            case tNow-tTrialStart >= caEpoch4[caCurrTrialIndex%] then
                outString$ := " during epoch 4";    'this probably won't happen unless the hazard function time is defined as after the start of epoch four
            else 'if none of these match, this is weird, there is something wrong with the defined epoch times
                outString$ := " Error in defined epoch times!";
            endcase 
        endif;
    endif;
    return outString$;
end


'This function simply optimizes the y axis of all electrodes
'And by simply, I mean REALLY simply
func OptimizeY%()
    
    View(DataWindow%).Optimise(-1);
    return 1;
end


func CallJoystickConfigDialog%()
    'This function was written simply to prevent "odd" autonaming of files when saving joystick calibration data
    'Unfortunately, there doesn't seem to be a way to *not* save the data as SampleStop automatically saves it, so
    'this is the next best thing.  Should work for either dialog-based or toolbar-based calls of Joystick config
    var key$;
    var primaryTxt$;
    var secondaryTxt$;
    key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Temp\\Filepref";
    SetPrimarySecondaryTxt(primaryTxt$,secondaryTxt$);
    
    'Set autoname to use a joystick-based name
    FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 3);
    FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 1);

    
    DoSampleAutoName(key$,"joystick","joy",primaryTxt$,secondaryTxt$);    
    
    JoystickConfigDialogX%();
    
    'Set autoname back to what it should be once we return
    FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 3);
    FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 1);

    DoSampleAutoName(key$,"ca","ca",primaryTxt$,secondaryTxt$);
    
    return 1;
end
