

const tunCVSID$ := "$Id$";


' Hello again
' Include all standard utilities, even if we don't use them (in case we modify for recording later)
#include "../util/ChannelUtilities.s2s"
#include "../util/UsreyUtil.s2s"
#include "../util/LogUtilities.s2s"
#include "../util/MiscUtilities.s2s"
#include "UsreyDAQ.s2s"
#include "DonutHuntDialogs.s2s"
#include "UsreyGratings.s2s"
#include "Joystick.s2s"
#include "UsreyFixationPoint.s2s"


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' Donut Hunt script START
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''


' Overall script control vars
var Pause% := 0;
var pausing% := 0;  'This is used to determine if we just exited a pause, so we can flush the button

' Channel numbers and handles
var StimHandle%;			' handle for stimulus application
var StimHandleSlave%;			' handle for stimulus application
var DataWindow%;		
var FrameChannel%;
var FrameSlaveChannel%;
var FixationPointChannel%;
var StimChannel%;
var StimChangeChannel%;
var ReadyChannel%;
var FixationPointSlaveChannel%;
var StimSlaveChannel%;
var ButtonChannel%;
var ButtonPort%;
var XChannel%;
var YChannel%; 

' Joystick stuff
var JoyChannel%;
var dhChanJoystickPos%;
var dhChanJoystickRangeL%;
var dhChanJoystickRangeC%;
var dhChanJoystickRangeR%;
var dhVCoeff;
var dhVConst;
var dhJoystickDisplayY;  'Joystick is using X axis, but this is a display thing

' xy windows for plotting (TuningWindow) and PSTH. 
var TuningWindow%[16];	' one for each wavemark channel

' XY window stuff
var XYWindow%;			' 
var iStimChannel%;	' channel number for stimulus in xy window
var iStimWindowChannel%;' channel number for stimulus window in xy window (fixation)
var iStimWindowChannel2%;' channel number for stimulus window in xy window (choice1)
var iStimWindowChannel3%;' channel number for stimulus window in xy window (choice2)
var iMonitorChannel%;	' channel number for monitor position display in xy window

' Display stuff
var FixWindowX[36],FixWindowY[36];	' points for displaying fixation window in xy view
var Choice1WindowX[36], Choice1WindowY[36];
var Choice2WindowX[36], Choice2WindowY[36];

' dummy vars
var iScript%;

'button stuff
var button1Press;
var button2Press;
var button1Release;
var button2Release;
var button1Thresh := 1.1;  'crossing level (downwards) for button 1, this is LEFT button
var button2Thresh := 2.0;  'crossing level (upwards) for button 2, this is RIGHT button
var buttonHysteresis := 0.05; 'how much noise we're allowing in the steady state voltage level; this may be high
var buttonMinTime := 0.005;  'five millisecond minimum
var buttonTime;  'the time of the most recent button event
var buttonStatus%;  'if 0, all buttons up, if 1, LEFT button currently pressed, if 2, RIGHT button currently pressed
var buttonDuringXHair%;
var buttonDuringSequence%;
var buttonError%;

var tNow:=0;		' latest time for which there are values recorded. Used in IdleProcessing
var tButtonStart;   ' start time on button check
var tLastUpdate:=-1;	' last time view was updated
var vTrigger;		' set by NextTime to indicate trigger transition
var tStateStart:=-1;	' time that present state started. Used to measure wait time, fixation time, etc. 
var tLastTrigger:=-1;	' last trigger time. New triggers have to be greater than this
var tTrigger:=-1;	' temp var for newly discovered trigger times
var tStimOn:=-1;	' time that stim was turned on. Used to measure spike rates 
var tStimSequence := -1;    ' time that stim sequence started; followed by pulses on frame channels
var tInterTrialTime := 0.2;	' Time spent waiting between trials (i.e. after screen is blank, but before fix point is presented) 
var tRise, tFall;
var tKludge := 0.06;    ' Add to Fixation time to account for stim sequence. Ugly hack, admittedly, but one does what one must. 

' Eye position stuff
var xEye, yEye;		' eye positions
var advanceStim% := 0;
var JuiceRewardMS;    'float version for math
var CorrX;            'location of correct, incorrect responses
var CorrY;
var WrongX;
var WrongY;


' Values for the "tuning curve"
var dhT1Values[1000];  'Value of randomized time between button press and stimulus onset
var dhLRValues[1000];  'Will be 0 for left and 1 for right, but DealStimuliToBlocks uses floats
var dhdContrastValues[1000];  'Change in contrast, will need to be integerized
var dhDonutDiamValues[1000];  'Donut Diameter values (outer)
var dhDonutDiamValues2[1000];  'Donut Diameter values (inner)
var dhCenterOriValues[1000];  'Center orientation values
var dhNValues%;  'Number of total values, if greater than 1000, uh-oh
var dhStimulusIndices%[1000];  'like tunValuesIndices%[], random order to index the Values arrays; we only need one
var dhdContrastValuesStringified$;  
var dhDonutDiamValuesStringified$;  'these will be for outer
var dhDonutDiamValuesStringified2$; 'these will be for inner
var dhCenterOriValuesStringified$;
var dhLRValuesStringified$;
var dhT1ValuesStringified$;




' Constants for states
const stateVSGWait%:=0;		        ' wait for vsg to send ready signal #1
const stateXHairUp%:=1;             ' have VSG put up the XHair to signal ready to initiate trial
const stateWaitForXHairOn%:= 2;     ' wait to make sure Xhair gets up
const stateWaitInitDown%:=3;        ' wait for initiation button press...
const stateWaitInitUpL%:=4;          ' wait for initiation button release
const stateWaitInitUpR%:=5;
const stateStartSequence%:=6;       ' start the trial sequence
const stateWaitOnsetTrigger%:=7;    ' wait for the stimulus onset trigger 
const stateWaitStimStart%:=8;       ' Note when the stimulus actually starts
const stateWaitResponse%:=9;    ' wait for button press to indicate response, advance stimulus, etc.
const stateWaitRelease%:=10;     ' not timing critical, but make sure button is up before starting next trial
const stateDone%:=11;            ' get outta here!
const stateITI%:=12;             ' wait to put up next trial
const statePreITIEnsureNoButton%:=13;  'make sure button isn't pressed
const stateCheckButtonDuringXHair%:=14;  'look at button after XHair wait period
const stateWaitContrastChange%:=15;  ' wait for contrast change
const stateWaitStimOffset%:=16;      ' wait for stimulus offset, there are several mask triggers
const stateCheckButtonDuringStim%:=17;  'look at button after stimulus period
const stateCheckStimOff%:=18;  'make sure stimulus is off
const stateWaitForFixPtOn%:=19;		' Waiting for fixation point return trigger (on)
const stateWaitForBlank%:=20;		' Waiting for fixation point return trigger (off)
const stateWaitForAcquisition%:=21;	' Waiting for subject to acquire fixation point
const stateMonkeyITI%:=22;          ' ITI for animal
const stateHoldFixationToContrastChange%:=23;  'holding fixation through contrast change
const stateHoldFixationToStimOffset%:=24;  'holding fixation point to end of stimulus
const stateReward%:=25;              'rewarding animal
const stateWaitJoystickResponse%:=26;  'waiting for joystick response
const stateWaitSaccadeResponse%:=27;   'waiting for saccade response
const stateMonkeyMissPenalty%:=28;    'penalty for missing

'const nMaskTriggers% := 4;
const nMaskTriggers% := 1;  'yikes!  Big change!
var nMaskTriggersFound%;

var iState% := stateVSGWait%;	' present state

var nTrialsStarted%:=0;
var nTrialsCompleted%:=0;
var nTrialsAborted% :=0;

var nCorrect%;
var pctCorrect;
var MonkeySuccess%;

var tic;  'Set a tick value equal to the duration of one clock tick in seconds, used to prevent finding
          'the same "pulse" twice
var pulseFound%;


' Init logging
LogInit(1);



'' Check if always looking flag is set. If so, issue a warning. 
if alwaysLooking% = 1 and dhIsHuman% = 0 then
    if Query("Always looking is SET. Unset?") = 1 then
        alwaysLooking% := 0;
    endif
endif


' run parameters script....
'tunContext$ := tunContextDAQ$;  'I think we can excise these
'tunType$ := tunTypeNone$;

iScript% := DonutHuntMainDialog%();



if iScript% = 1 then
    LogInfo("Proceed with DAQ.\n");
else
	LogInfo("User cancel - exit gracefully\n");
	Halt;
endif;


' Assign channel numbers
XChannel% := 21;
YChannel% := 22; 
FixationPointChannel% := 24;
StimChannel% := 25;
ReadyChannel% := 27;            ' Look for ready signal on port 2 (same as fixpt). 
FixationPointSlaveChannel% := 28;
StimSlaveChannel% := 29;
FrameChannel% := 19;
FrameSlaveChannel% := 20;
ButtonChannel% := 1;
ButtonPort% := 5;  'This appears to be correct
JoyChannel% := 13;


InitJoystickX(JoyChannel%,GetJoystickPortX%());

if dhIsHuman% = 0 then
    ' Fetch electrode information. 
    dhNWavemarks% := GetWavemarkPorts%(dhWavemarkPorts%[]);
    dhNContinuous% := GetContinuousPorts%(dhContinuousPorts%[]);
endif;


'Create sampling configuration
CreateSampleConfiguration();

'Create stimulus order
CreateStimulusOrder();  'this has previously been done within CreateSampleConfiguration


' Get display windows ready
InitializeWindows();

tic := View(DataWindow%).BinSize(ReadyChannel%);

' Prepare the toolbar buttons
InitializeToolbar();


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' Donut Hunt script END
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc CreateSampleConfiguration()
	var i%;
    var temp1$;
    var temp2$;
	SampleClear(); 'Set standard sampling state
	SampleAutoComment(0); 'Prompt for comment after sampling
	SampleAutoCommit(60); 'Seconds between each file commit
    SampleMode(1); 'Continuous sampling
    
    ' Set path for new data files, and for those saved automatically
    FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 3);  'automatic
    FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 1);  'new data files
    
    SampleAutoName$(dataCellName$ + "_donuthunt_000");  ' set datafile name
    SampleAutoFile(1);  'Set automatic data filing
    SampleTextMark(200);  'Set Channel 30 as textmark channel, 200 characters per
    
    'Channel recording definitions
	SampleEvent(FixationPointChannel%,2,2,3600); 'Trigger channel, level
	SampleComment$(FixationPointChannel%,"Fixpt");
	SampleTitle$(FixationPointChannel%,"Fixpt");
	
	SampleEvent(StimChannel%,3,2,3600); 'Trigger channel, level
	SampleComment$(StimChannel%,"Stim");
	SampleTitle$(StimChannel%,"Stim");
    
	SampleEvent(ReadyChannel%, 1, 2, 3600); 'Trigger channel, level
	SampleComment$(ReadyChannel%,"VSG Ready");
	SampleTitle$(ReadyChannel%,"VSG Ready");
    
    ' djs Add channels to capture slave fixpt and stim onset
	SampleEvent(FixationPointSlaveChannel%, 6, 2, 3600); 'Trigger channel, level
	SampleComment$(FixationPointSlaveChannel%,"Fixpt-Slave");
	SampleTitle$(FixationPointSlaveChannel%,"Fixpt-Slave");
	
	SampleEvent(StimSlaveChannel%, 7, 2,3600); 'Trigger channel, level
	SampleComment$(StimSlaveChannel%,"Stim-Slave");
	SampleTitle$(StimSlaveChannel%,"Stim-Slave");
    
	SampleEvent(FrameChannel%, 0, 2, 3600);
	SampleComment$(FrameChannel%,"Frame");
	SampleTitle$(FrameChannel%,"Frame");
    
	SampleEvent(FrameSlaveChannel%, 4, 2, 3600);
	SampleComment$(FrameSlaveChannel%,"Frame-Slave");
	SampleTitle$(FrameSlaveChannel%,"Frame-Slave");
    
    
    'Set up fixation, response acquisition based on monkey/human, joystick usage
    if dhIsHuman% = 0 then
        
        'eye position channels
        SampleWaveform(XChannel%, GetEyeXPort%(), 1000);
        SampleTitle$(XChannel%,"Eye X");
        SampleWaveform(YChannel%, GetEyeYPort%(), 1000);
        SampleTitle$(YChannel%,"Eye Y");
        
        
        ' Electrodes: wavemark/continuous
        ' 12/6/2010
        ' Wavemark channels will be channels # 1-N, waveform N+1 - N+1+M, where there are N wavemark channels
        ' and M waveform channels. 
        for i% := 0 to dhNWavemarks%-1 do
            SampleWaveMark(i% + 1, dhWavemarkPorts%[i%], 2000, 34, 15, 28000); ' chan, port, event rate, points, pre-trigger, rate
            SampleTitle$(i% + 1, "WMrk " + str$(dhWavemarkPorts%[i%])); 
        next
        for i% := 0 to dhNContinuous%-1 do
            SampleWaveform(dhNWavemarks% + i% + 1, dhContinuousPorts%[i%], 20000);
            SampleTitle$(dhNWavemarks% + i% + 1, "Cont " + str$(dhContinuousPorts%[i%]));
        next
        
        
        'Set up joystick channel if using joystick, monkey only
        if dhUseJoystick% = 1 then
            SampleWaveform(JoyChannel%, GetJoystickPortX%(), 1000);
            SampleTitle$(JoyChannel%, "Joy X");
        endif;
        
    else 'if human, set up button channel
        
        'add waveform channel to analyze button events
        if ButtonPort% = 0 then
            message("Ben hain't told you which port that there button device thingy is on!");
        endif;
        SampleWaveform(ButtonChannel%,ButtonPort%,10000);  'Giving 0.1 ms resolution for now
        SampleComment$(ButtonChannel%,"Raw Button");
        SampleTitle$(ButtonChannel%,"Raw Button");
        
    endif;
    
    SampleSequencer(script$ + "Tuning.pls");
    SampleOptimise(2,2,2,2,50);  'Set optimise mode (do this last)
    SampleMode(1); 'Continuous sampling
	
end;


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc CreateStimulusOrder()
    'This used to be done within CreateSampleConfiguration, but that didn't make a lot of sense to me
    'as there's really no connection between setting up a sampling configuration and getting the order
    'of the stimuli defined.  For this script, I'm breaking it free.
    
    var nExistingBlocks%;   
    var i%;
    var j%;  
    var Comma$:="";  'start empty
    var temp%[1000];
    
    'get number of values
    dhNValues% := 2*dhNContrastLevels%*dhNDonutDiameters%*dhNCoreOrientations%;
    
    'reset nExistingBlocks%
    nExistingBlocks% := 1;
    
    'Note that these really only need to be done once.  They used to be done inside the FOR loop below,
    'but the result was, of course, always the same so obviously, why do that?
    'Assign L/R
    nExistingBlocks% := DealStimuliToBlocks%(dhLRValues[],dhNValues%,nExistingBlocks%,2,0,1,0);
    'Assign contrast levels
    nExistingBlocks% := DealStimuliToBlocks%(dhdContrastValues[],dhNValues%,nExistingBlocks%,dhNContrastLevels%,dhMinDContrast,dhMaxDContrast,dhContrastLogProgression%);
    ArrAdd(dhdContrastValues[],dhCoreContrast);  'Put it in terms of absolute contrast, not change in contrast
    'Assign donut diameter values
    docase
    case dhDonutConstant% = 0 then
        nExistingBlocks% := DealStimuliToBlocks%(dhDonutDiamValues[],dhNValues%,nExistingBlocks%,dhNDonutDiameters%,dhMinDonutOuterDiameter,dhMaxDonutOuterDiameter,dhDiameterLogProgression%);
        ArrConst(dhDonutDiamValues2[],dhDonutInnerDiameter);
    case dhDonutConstant% = 1 then
        nExistingBlocks% := DealStimuliToBlocks%(dhDonutDiamValues2[],dhNValues%,nExistingBlocks%,dhNDonutDiameters%,dhMinDonutInnerDiameter,dhMaxDonutInnerDiameter,dhDiameterLogProgression%);
        ArrConst(dhDonutDiamValues[],dhDonutOuterDiameter);
    case dhDonutConstant% = 2 then
        nExistingBlocks% := DealStimuliToBlocks%(dhDonutDiamValues2[],dhNValues%,nExistingBlocks%,dhNDonutDiameters%,dhMinDonutInnerDiameter,dhMaxDonutInnerDiameter,dhDiameterLogProgression%);        
        ArrConst(dhDonutDiamValues[],dhDonutDiamValues2[]);  'put inner values into outer values
        ArrAdd(dhDonutDiamValues[],dhDonutWidth);  'create value for donut outer based on inner plus width
    endcase
    'Assign core orientation values
    nExistingBlocks% := DealStimuliToBlocks%(dhCenterOriValues[],dhNValues%,nExistingBlocks%,dhNCoreOrientations%,dhMinCoreOrientation,dhMaxCoreOrientation,0);
    
    if nExistingBlocks% <> dhNValues% then
        if nExistingBlocks% = -1 then
            message("DealStimuliToBlocks returned -1 (error)!");
        else
            message("NValues (" + Str$(dhNValues%) + ") is not equal to total blocks created by DS2Bs (" + Str$(nExistingBlocks%) + ") Hmm!");
        endif
        halt;
    endif;    
    
    
    for i% := 1 to dhNRepeats% do
        
        'Assign T1 values, this needs to be done every time or we only get a small number of T1 values repeated
        Rand(dhT1Values[],dhRandStimDelay,dhMinStimDelay);  'dhT1Values[] is filled
        
        'Assign random indices - one size fits all, we will index each Values array with the same number by design
        Shuffle%(dhNValues%,temp%[]);
        'This is the non-shuffled version, I don't think I even want to give Ben that option because it doesn't make sense (but useful for testing)
        'for j% := 0 to dhNValues%-1 do
            'temp%[j%] := j%;
        'next;
        arrconst(dhStimulusIndices%[dhNValues%*(i%-1):dhNValues%],temp%[0:dhNValues%]);
        
        'Set the Comma$ variable to have a comma in it for all rounds following the first one
        if i% > 1 then
            Comma$ := ",";
        endif;
               
        
        'I don't know if I need to stringify anything, and if so if it has to be done here...
        dhdContrastValuesStringified$ := dhdContrastValuesStringified$ + Comma$ + StringifyProgression$(dhNValues%, dhdContrastValues[], temp%[]);
        dhDonutDiamValuesStringified$ := dhDonutDiamValuesStringified$ + Comma$ + StringifyProgression$(dhNValues%, dhDonutDiamValues[], temp%[]);
        dhDonutDiamValuesStringified2$ := dhDonutDiamValuesStringified2$ + Comma$ + StringifyProgression$(dhNValues%, dhDonutDiamValues2[], temp%[]);
        dhCenterOriValuesStringified$ := dhCenterOriValuesStringified$ + Comma$ + StringifyProgression$(dhNValues%, dhCenterOriValues[], temp%[]);
        'dhLRValuesStringified$ := dhLRValuesStringified$ + Comma$ + StringifyProgressionLR$(dhNValues%, dhLRValues[], dhStimulusIndices%[]);  'this is L/R, not 0/1, dan's VSG uses 0/1 after all
        dhLRValuesStringified$ := dhLRValuesStringified$ + Comma$ + StringifyProgression$(dhNValues%, dhLRValues[], temp%[]);  'this is 0/1 NOTE THAT 0 CORRESPONDS TO LEFT ON THE NON-REVERSED SCREEN!
                                                                                                                                            'that means that 0 is RIGHT when viewed in the stereoscope
        dhT1ValuesStringified$ := dhT1ValuesStringified$ + Comma$ + StringifyProgression$(dhNValues%, dhT1Values[], temp%[]);
    next;
    

'    for j% := 0 to (dhNValues%*dhNRepeats%)-1 do    
'        'printlog(str$(dhStimulusIndices%[j%])+"T,"+str$(GetLR(j%))+","+str$(dhCoreContrast)+","+str$(GetContrast(j%))+","+str$(GetDiam(j%))+","+str$(GetOri(j%))+"\n");
'        printlog(str$(GetLR(j%))+","+str$(dhCoreContrast)+","+str$(GetContrast(j%))+","+str$(GetDiam(j%))+","+str$(GetOri(j%))+"\n");
'    next;
'    'printlog("%d\n",dhStimulusIndices%[0:2*dhNValues%]);
'    printlog("LR_%s\n",dhLRValuesStringified$);
'    printlog("Cont_%s\n",dhdContrastValuesStringified$);
'    printlog("Diam_%s\n",dhDonutDiamValuesStringified$);
'    printlog("Ori_%s\n",dhCenterOriValuesStringified$);
    
end;



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc InitializeWindows()
    var i%;
    var WindowStep;
    var index%;
    var twopi;
    twopi := 2.0*4.0*ATan(1.0);
    ' These set the max and min window dimensions. They are also used to scale the joystick 
    ' position to the xy display, so if you change the size of the window, do it by changing
    ' these vars!
    var xyXMin := -30;
    var xyXMax := 30;
    var xyYMin := -30;
    var xyYMax := 30;
    var lh, cl, ch, rl;
    dhJoystickDisplayY := -12;     ' y coord in xy window where joystick position is shown.
    
    
    ' Make spike2 use all of monitor 1
    View(App()).Window(0, 0, 100, 100, 1);
    
    
	'Open the data sampling window
	DataWindow% := FileNew(0,1);
	Window(0,48,50,95);
    XRange(0, 30);
	'View(DataWindow%).WindowVisible(1);  'ought to be redundant
    
    
    if dhIsHuman% = 0 then 'for monkey, open window for display of tuning results, eye position, etc.
        
        ' open xy window to display tuning results    
        if dhNWavemarks% > 0 then
            WindowStep := 100/dhNWavemarks%;
        endif
        for i% := 0 to dhNWavemarks%-1 do
            TuningWindow%[i%] := FileNew(12);
            Window(50, i%*WindowStep, 100, (i%+1)*WindowStep);
            ChanTitle$(0, "Spikes/s");
            TuningCurveLabels(dhWavemarkPorts%[i%]);
            WindowVisible(1);
        next;
        
        'Open an XY view to display eye position
        XYWindow% := FileNew(12);
        XRange(xyXMin, xyXMax);
        YRange(-2, xyYMin, xyYMax);
        XYDrawMode(0,5,0);
        WindowVisible(1);
        Window(0, 0, 50, 47);
        XYColour(1,16);
        XYSize(1,-1);
    
        'Calcuate the fixation window, and choice windows if appropriate
        for index% := 0 to 35 do
            FixWindowX[index%] := FixationX + WindowRadius * Cos(index% * twopi/36.0);
            FixWindowY[index%] := FixationY + WindowRadius * Sin(index% * twopi/36.0);
            'note that since this is done at the very beginning, we don't know which window is the target window on any given trial, so the two are identical 
            if dhUseJoystick% > 1 then
                Choice1WindowX[index%] := FixationX + dhXOffset + dhChoicePointRadius * Cos(index% * twopi/36.0);
                Choice1WindowY[index%] := FixationY + dhYOffset + dhChoicePointRadius * Sin(index% * twopi/36.0);
                Choice2WindowX[index%] := FixationX - dhXOffset + dhChoicePointRadius * Cos(index% * twopi/36.0);
                Choice2WindowY[index%] := FixationY + dhYOffset + dhChoicePointRadius * Sin(index% * twopi/36.0);
            endif;
        next;
        
     
        
        'Create a new channel in the XY view to display the fixation window
        iStimWindowChannel% := XYSetChan(0);
        XYColour(iStimWindowChannel%,13);
        XYDrawMode(iStimWindowChannel%,2,1);
        XYJoin(iStimWindowChannel%,1);
        'Draw the fixation window
        XYAddData(iStimWindowChannel%, FixWindowX[], FixWindowY[]);
        if dhUseJoystick% > 1 then
            iStimWindowChannel2% := XYSetChan(0);
            XYColour(iStimWindowChannel2%,13);
            XYDrawMode(iStimWindowChannel2%,2,1);
            XYJoin(iStimWindowChannel2%,1);
            'Draw the fixation window
            XYAddData(iStimWindowChannel2%,Choice1WindowX[], Choice1WindowY[]);
            
            iStimWindowChannel3% := XYSetChan(0);
            XYColour(iStimWindowChannel3%,13);
            XYDrawMode(iStimWindowChannel3%,2,1);
            XYJoin(iStimWindowChannel3%,1);
            'Draw the fixation window
            XYAddData(iStimWindowChannel3%,Choice2WindowX[], Choice2WindowY[]);
        endif;
        

        'Create a new channel in the XY view to display the fixation point
        iStimChannel% := XYSetChan(0);

        'Create a new channel in the XY view to show the monitor's location
        iMonitorChannel% := XYSetChan(0);
        XYColour(iMonitorChannel%,13);
        XYDrawMode(iMonitorChannel%,3,1);
        XYJoin(iMonitorChannel%,2);
        XYAddData(iMonitorChannel%,-9,-7);
        XYAddData(iMonitorChannel%,9,-7);
        XYAddData(iMonitorChannel%,9,7);
        XYAddData(iMonitorChannel%,-9,7);    
        
        'If using joystick (not just fixating) set up joystick stuff
        if dhUseJoystick% = 1 then
            ' Set up joystick range numbers
            '    lh := GetJoystickLeftHigh();
            '    cl := GetJoystickCenterLow();
            '    ch := GetJoystickCenterHigh();
            '    rl := GetJoystickRightLow();
            'Updated for new joystick code, 1/2/24 -jj
            lh := jsC2L;
            cl := jsL2C;
            ch := jsR2C;
            rl := JSC2R;
        
            ' We'll take the joystick voltage 'v' (which should be between 1 and 4volts) and 
            ' convert it for display in the xy window like this:
            ' x coord = v * rivVCoeff + rivVConst;
        
            dhVCoeff := (xyXMax - xyXMin)/3;
            dhVConst := -2.5 * dhVCoeff;
        
            dhChanJoystickRangeL% := XYSetChan(0);
            XYColour(dhChanJoystickRangeL%, 13);
            XYSize(dhChanJoystickRangeL%, 2);
            XYJoin(dhChanJoystickRangeL%, 1);
            XYDrawMode(dhChanJoystickRangeL%, 4, 3);
            XYAddData(dhChanJoystickRangeL%, xyXMin, dhJoystickDisplayY+1);
            XYAddData(dhChanJoystickRangeL%, lh * dhVCoeff + dhVConst, dhJoystickDisplayY+1);
        
            dhChanJoystickRangeC% := XYSetChan(0);
            XYColour(dhChanJoystickRangeC%, 13);
            XYSize(dhChanJoystickRangeC%, 2);
            XYJoin(dhChanJoystickRangeC%, 1);
            XYDrawMode(dhChanJoystickRangeC%, 4, 3);
            XYAddData(dhChanJoystickRangeC%, cl * dhVCoeff + dhVConst, dhJoystickDisplayY+1);
            XYAddData(dhChanJoystickRangeC%, ch * dhVCoeff + dhVConst, dhJoystickDisplayY+1);
        
            dhChanJoystickRangeR% := XYSetChan(0);
            XYColour(dhChanJoystickRangeR%, 13);
            XYSize(dhChanJoystickRangeR%, 2);
            XYJoin(dhChanJoystickRangeR%, 1);
            XYDrawMode(dhChanJoystickRangeR%, 4, 3);
            XYAddData(dhChanJoystickRangeR%, rl * dhVCoeff + dhVConst, dhJoystickDisplayY+1);
            XYAddData(dhChanJoystickRangeR%, xyXMax, dhJoystickDisplayY+1);
        
        
            ' this channel is for a symbol representing the actual joystick position
            dhChanJoystickPos% := XYSetChan(0);
            XYColour(dhChanJoystickPos%, 11);
            XYDrawMode(dhChanJoystickPos%, 1, 8);
            XYDrawMode(dhChanJoystickPos%, 2, 10);
            XYSize(dhChanJoystickPos%, -1);
            
        endif;        
        
    endif;
    
    
end;







'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' InitializeToolbar - prepare toolbar buttons. Note that the idle processing function (ToolbarSet(0, blah, blah)) is 
' not set here. That's done when the user hits the start button.
'
proc InitializeToolbar()

	View(App(8)).WindowVisible(0);	'Hide the standard sample bar
	ToolbarVisible(1);
	ToolbarSet(1,"Sample start",Start%);
	ToolbarSet(2,"Sample stop", Stop%);
	ToolbarSet(3,"Pause stimuli",PauseStimuli%);
	ToolbarSet(4,"Resume stimuli",ResumeStimuli%);
    ToolbarSet(5,"Juice", Juice%);
    ToolbarSet(6,"Select Wavemarks",SelectWavemarkDialog%);
	ToolbarSet(7,"Quit",Quit%);
	ToolbarEnable(2,0);
	ToolbarEnable(3,0);
	ToolbarEnable(4,0);
	Toolbar("Go",0x3ff);

end;





''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Start%()
	var cmdLine$;
	var cmdLineM$;
	var cmdLineS$;
    var Opener$;
    var OpenerM$;
    var OpenerS$;
    var ProgName$;
    var XHairArg$:="";  'Note that all variables are used to construct cmdLine$, if unused, must be empty
    var BGColor$;
    var Dist2Screen$;
    var TriggerPort$;
    var TriggerArg$;
    var Verbose$:=" -v ";  'For now, verbose is always on
    var RefrLock$:="";
    var OffsetFile$:="";
    var StimDur$:="";
    var MGrat$:=" -s ";
    var SGrat$:=" -s ";
    var MGratParam$:="";
	var SGratParam$:="";
    var MasterIndicator$:="";  'Do not use Master Indicator
    var SlaveIndicator$:="";  'or Slave Indicator for fixstim, set if needed
    var KlugeArg$:=" -H ";  'this is for a Jerry-rigged "hole" in Box O' Donuts slave stimuli 
    var MValues$:="";
    var SValues$:="";   
    var S2Values$:="";  'won't be used except for Box O' Donuts 
    var KlugeValues$:="";  'this is for a Jerry-rigged "hole" in Box O' Donuts slave stimuli
    var key$;
    var i%;
    'var CRGPrimaryArg$;  'This is always "-R", hard code
    var CRGPrimaryValues$;
    var CRGSecondaryArg$;
    var CRGSecondaryValues$;
    var specHandle%;
    var specFileNameM$:="D:\\work\\DonutHuntSpecFile.txt";
    var specFileNameS$:="Z:\\work\\DonutHuntSpecFile.txt";
    'specFileName$:="E:\\DonutHuntSpecFile.txt";  'for testing, Jeff's computer
    var SpecFileArg$;
    var SpecFileArgM$;
    var SpecFileArgS$;
    var coreParam$;
    var donutParam$;
    var coreScreen$;
    var donutScreen$;
    var correctContrast%;
    var wrongContrast%;
    var maximumChoicePointDur := 100;  '100 seconds
    var dhLOffset;  'x offset for left stimulus, allows us to shove the L stimulus off the screen in one condition
    
	
	SampleStart(0); 'Start sampling
    
	' Set Sequencer Variable #3 based on juicer type 
    SetJuicerSequencerVariable%();  'Do this so that SafeSampleKey below doesn't open juicer
    
    ' djs Set sequencer variable 5 to enable rivalry triggering
    SampleSeqVar(5, 1);
    
    ' Clear any trigger bits on digout lines.
    SafeSampleKey("0");
    
    'Fetch all the grating parameters
    GetDonutHuntMainParameters(); 
    GetDonutHuntGratingParameters();
    GetDonutHuntXHairParameters();
    
    'open a file to write the trial-by-trial specs for the VSG
    specHandle% := FileOpen(specFileNameM$, 8, 1);
	' write info
    coreParam$ := GetGratingParameters$("Core");  'this grabs core 
    donutParam$ := GetGratingParameters$("Donut");  'this grabs donut
    
    'Assign master and slave screens
    docase
    case dhShowDonutOnMaster% = 0 then
        coreScreen$ := "Slave";
        donutScreen$ := "Master";
    case dhShowDonutOnMaster% = 1 then
        coreScreen$ := "Master";
        donutScreen$ := "Slave";
    case dhShowDonutOnMaster% = 2 then
        coreScreen$ := "Master";
        donutScreen$ := "Danish";
    case dhShowDonutOnMaster% = 3 then
        coreScreen$ := "Slave";
        donutScreen$ := "Danish";        
    endcase;
    
    'determine how to do the contrast of the choice points
    docase
    case dhUseJoystick% < 2 or dhIsHuman% = 1 then
        correctContrast% := 0;
        wrongContrast% := 0;
    case dhUseJoystick% = 2 then
        correctContrast% := 100;
        wrongContrast% := 100;
    case dhUseJoystick% = 3 then
        correctContrast% := 100;
        wrongContrast% := dhWrongCPContrast%;
    endcase
    
    if dhMoveLStimOffScreen% = 1 then
        dhLOffset := 30;  'that ought to do it
    else
        dhLOffset := dhXOffset;  'otherwise put it where it is expected, opposite the right stimulus
    endif
    
    
    Print("%s,%s,",coreScreen$,donutScreen$);  'Specifies which item is on which screen (hopefully syntax is right)
    Print("answerpoints,%d,%d,%f\n",correctContrast%,wrongContrast%,maximumChoicePointDur); 'line 1 continued, choice point info
    Print("%s\n",coreParam$);  'core-stim-spec
    Print("%f,%f,%f,%f\n",FixationX-dhLOffset,FixationY+dhYOffset,FixationX+dhXOffset,FixationY+dhYOffset);  'xL,yL,xR,yR master
    Print("%s\n",donutParam$);  'donut-stim-spec
    Print("%f,%f,%f,%f\n",FixationX-dhLOffset,FixationY+dhYOffset,FixationX+dhXOffset,FixationY+dhYOffset);  'xL,yL,xR,yR slave, same as master            
    'Print("%f,%f,%f,%f,%f\n",dhDelayBeforeDContrast,dhDurAfterDContrast,dhCoreContrast,dhNGrids%,dhGridDur);  't2,t3,contrast_base, number of grids, grid duration    t2,t3 gridDur in s
    Print("%f,%f,%f,%f,%f\n",dhDelayBeforeDContrast,dhDurAfterDContrast,dhCoreContrast,dhGridTF,dhGridDur);  't2,t3,contrast_base, grid temporal frequency, grid total duration    t2,t3 gridDur in s
    Print("%s\n",dhT1ValuesStringified$); 't1_0,t1_1,t1_2,...           per-trial t1 values in seconds
    Print("%s\n",dhdContrastValuesStringified$);  'Cup_0,Cup_1,....           per-trial contrast-up values
    Print("%s\n",dhLRValuesStringified$);  'LR_0,LR_1,...               per-trial values for which stim on master screen changes contrast. 0(1) = Left(Right)
    Print("%s\n",dhCenterOriValuesStringified$);  'Ori_0,Ori_1,...              per-trial values for ori of gratings on master screen
    Print("%s\n",dhDonutDiamValuesStringified$);  'Diam_0,Diam_1,...       per-trial outer diameter values for donuts on slave screen
    Print("%s\n",dhDonutDiamValuesStringified2$);  'Diam_0,Diam_1,...       per-trial inner diameter values for donuts on slave screen
    ' close spec file
	FileClose(0);

    
    'halt();    'for testing, allows me to look at the output file, looks kosher
    
    
    
    'Begin building the command line argument
    Opener$ := "cmd /k " + bin$;
    OpenerM$ := "cmd /k " + bin$ + "\\fixstim.exe ";
    OpenerS$ := "cmd /k " + bin$ + "\\fixstim.exe -c 192.168.1.2:7000 ";
    
    ' Fetch the offset filename
    key$ := GetRegistryKey$(1) + "\\Rivalry";
    OffsetFile$ := GetStringRegistryValue$(GetRegistryKey$(1), "OffsetFile", "file_not_found");
    OffsetFile$ := " -r " + OffsetFile$;
    
    ' Fetch the stimulus duration (in dualstim, stimoff is done by counting frames because of VSG frame synching)
    StimDur$ := " -t 2.0 ";  'add aribitrary stimulus duration in seconds - for this experiment it will be ignored, but must be present   
    
    'Fixation arguments are set by UsreyFixationPoint.s2s and need not be done here
    
    'Set crosshair options
    'split XHairArg$ construction into two lines due to length
    XHairArg$ := " -h " + Str$(FixationX) + "," + Str$(FixationY) + "," + Str$(dhXHairInnerRadiusOffset) + "," + Str$(dhXHairMiddleRadiusOffset) + ","; 
    XHairArg$ := XHairArg$ + Str$(dhXHairOuterRadiusOffset) + "," + Str$(dhXHairNumGridDivisions%) + "," + Str$(dhXHairTicInnerOffset) + "," + Str$(dhXHairTicOuterOffset) + " ";
    
    'Set background color
    BGColor$ := " -b gray ";  'giving no option, always gray
    
    'Set distance to screen
    Dist2Screen$ := " -d " + GetDistanceToScreenMM$();
    
    'Set trigger port
    TriggerPort$ := " -p 2 ";  'hard-coded
    
    'Turn on verbose
    Verbose$ := " -v ";   
    
    ' Trigger arg
    TriggerArg$ := " -V 128,FS ";
    
    'Set the Spec file
    SpecFileArgM$ := " -I " + specFileNameM$;
    SpecFileArgS$ := " -U " + specFileNameS$;
    

    'Build command line, any values that are unnecessary will be empty, so the build should work no matter what type of command line is required
    cmdLine$ := Opener$ + ProgName$ + FixationArg$ + XHairArg$ + BGColor$ + Dist2Screen$ + TriggerPort$ + Verbose$; 'prelim stuff
    cmdLine$ := cmdLine$ + RefrLock$ + OffsetFile$ + StimDur$;  'Dual VSG stuff
    cmdLine$ := cmdLine$ + SpecFileArg$;  'specification file
    
    cmdLineM$ := OpenerM$ + FixationArg$ + XHairArg$ + BGColor$ + Dist2Screen$ + TriggerPort$ + TriggerArg$ + Verbose$ + SpecFileArgM$;
    cmdLineS$ := OpenerS$ + FixationArg$ + XHairArg$ + BGColor$ + Dist2Screen$ + TriggerPort$ + TriggerArg$ + Verbose$ + SpecFileArgS$;
    
    
    ' Record initial text marks. The command line may need to be broken into pieces.
    ' For tuning: Version 6,7 are always box--o-donuts
    ' Version 8 is CRG.
    
'    docase
'    case tunType$ = tunTypeBoxODonuts$ then    
'        if tunUseMaintainMode% = 1 then  'if fixation point stays on, extraction is version 6
'            SampleText("Tuning,6," + str$(Len(cmdLine$)));
'        else 'value is 0, fixation point goes off, extraction is version 7
'            SampleText("Tuning,7," + str$(Len(cmdLine$)));
'        endif;
'    case tunType$ = tunTypeCRG$ then
'        SampleText("Tuning,8," + str$(Len(cmdLine$)));
'    else
'        ' djs Always version 3. NO difference if maintainmode is used or not. 
'        SampleText("Tuning,3," + str$(Len(cmdLine$)));
'    endcase;
    
    SampleText(tunCVSID$);
    for i% := 1 to Len(cmdLine$) step 100 do
        SampleText(Mid$(cmdLine$, i%, 100));
    next
    
    
	'Begin the stimulus program. It will take a few seconds for the VSG to initialize.
    PrintLog("Master: " + cmdLineM$ + "\n");
    PrintLog("Slave: " + cmdLineS$ + "\n");
    printlog("num advances is %d and num repeats is %d\n",dhNValues%,dhNRepeats%);
    dhNValues% := dhNValues%*dhNRepeats%;  'Idle loop uses dhNValues as a stopping guide, but we need the number of repeats
    
    
    StimHandle% := ProgRun(cmdLineM$, 1);       
    StimHandleSlave% := ProgRun(cmdLineS$, 1);
	if StimHandle% <0 then Message("Could not start stimulus."); halt; endif
    if StimHandleSlave% < 0 then Message("Could not start slave stimulus."); halt; endif
	
	ToolbarSet(0,"",IdleProcessing%);	'Enable the IdleProcessing function
	ToolbarEnable(2,1);
	ToolbarEnable(1,0);
	ToolbarEnable(6,0);
	ToolbarEnable(7,0);
	View(DataWindow%);
	Yield(5);
    
return 1;
end;




''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Stop%()
    var i%, j%, m%, mylen%;
    var fn$;
    
	' Disable idle process func
	ToolbarSet(0,"");

	' Tell stim app to shut down
    ' Extraneous X SafeSampleKey("X");
	SafeSampleKey("Q");
	Yield(.1);
	SampleStop();

	ProgKill(StimHandle%);
	while ProgStatus(StimHandle%) > 0 do
		Yield();
	wend

	' Write parameter file
	WriteParameterFile();
    
    'I don't think we care to do this
'	' Increment daily totals and save then
'	TotalTrials% += nTrialsStarted%;
'	TotalRewards% += nTrialsCompleted%;
'	SaveDailyTotals();
    
    View(DataWindow%);
    ExportChanList();
    ExportChanList(0,maxtime(),30);  '30 is the textmark channel
    
'Code for putting other various channels into the Matlab extraction, Ben doesn't want them but they will be useful for other code    
'    if dhIsHuman% = 0 then
'        ExportChanList(0,maxtime(),XChannel%);  'Eye position channel, X
'        ExportChanList(0,maxtime(),YChannel%);  'Eye position channel, Y
'        if dhUseJoystick% = 1 then
'            ExportChanList(0,maxtime(),JoyChannel%);  'Joystick channel
'        endif;
'        for i% := 0 to dhNWavemarks%-1 do
'            ExportChanList(0,maxtime(),i%+1);  'Wavemark channel(s)
'        next;
'        for i% := 0 to dhNContinuous%-1 do
'            ExportChanList(0,maxtime(),dhNWavemarks%+i%+1);  'Continuous channel(s)
'        next;
'    else
'        ExportChanList(0,maxtime(),ButtonChannel%);  'Button channel
'    endif;
    
    
    fn$ := FileName$();  'get current file name
    mylen% := Len(fn$);
    fn$ := Left$(fn$,mylen%-4);
    if Right$(fn$,1) = "." then  'if the file is an .smrx, we need to adjust further
        fn$ := Left$(fn$,Len(fn$)-1);
    endif;
    fn$ := fn$ + ".mat";
    FileSaveAs(fn$,100,0,"",0,"UseSName=0"); 'Do not overwrite the .mat file - should have a different name and if it doesn't that is a red flag
    

end;


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func PauseStimuli%();
Pause% :=1;
ToolbarEnable(3,0);
ToolbarEnable(4,1);
return 1;
end


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func ResumeStimuli%();
Pause% :=0;
ToolbarEnable(3,1);
ToolbarEnable(4,0);
return 1;
end


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc WriteParameterFile()
	var parFileName$;
	var parFileBase$;
	var parHandle%;
    var tempPrimary$;
    var tempSecondary$;

	' get filename for parfile (data file + "par" extension) and open it
	View(DataWindow%);
	parFileBase$ := FileName$(1) + FileName$(2) + FileName$(3) + FileName$(4);
	parFileName$ := parFileBase$ + ".par";
	PrintLog("par filename is " + parFileName$ + "\n");
	parHandle% := FileOpen(parFileName$, 8, 1);

	' write general info - eye coil gains, dist to screen
	Print("Tuning parameters for %s\n\n", parFileBase$);

	Print("General information\n");
	Print("-------------------\n\n");
	Print("Distance to screen (MM)    : %s\n", GetDistanceToScreenMM$());
    docase
    case dhShowDonutOnMaster% = 0 then
        Print("Core is on SLAVE, Donut is on MASTER\n");
    case dhShowDonutOnMaster% = 1 then
        Print("Core is on MASTER, Donut is on SLAVE\n");
    case dhShowDonutOnMaster% = 2 then
        Print("Core is on MASTER, Donut is on MASTER ('Danish')\n");
    case dhShowDonutOnMaster% = 3 then
        Print("Core is on SLAVE, Donut is on SLAVE ('Danish')\n");
    endcase;


	' write fixpoint parameters
	Print("\nFixation point\n");
	Print("-------------------\n\n");
	Print("Window radius              : %f\n", WindowRadius);
	Print("Position (x, degrees)      : %f\n", FixationX);
	Print("Position (y, degrees)      : %f\n", FixationY);
	Print("Diameter (degrees)         : %f\n", FixationDiameter);
	Print("Color                      : %s\n", FixationColor$);
    
    ' write crosshair parameters
    Print("\nCrosshairs\n");
	Print("-------------------\n\n");
    Print("Inner radius offset        : %f\n",dhXHairInnerRadiusOffset);
    Print("Middle radius offset       : %f\n",dhXHairMiddleRadiusOffset);
    Print("Outer radius offset        : %f\n",dhXHairOuterRadiusOffset);
    Print("Number of grid divisions   : %d\n",dhXHairNumGridDivisions%);
    Print("Inner tick offset          : %f\n",dhXHairTicInnerOffset);
    Print("Outer tick offset          : %f\n",dhXHairTicOuterOffset);    
    
	' write stimulus parameters
    Print("\nCommon Grating Properties\n");  'Master grating
	Print("-------------------\n\n");
    
    Print("X Offset                   : %f\n",dhXOffset);
    Print("Y Offset                   : %f\n",dhYOffset);
    Print("Spatial Frequency          : %f\n",dhSpatialFreq);
    Print("Temporal Frequency         : %f\n",dhTemporalFreq);
    Print("Initial Phase              : %d\n",dhInitialPhase%);
    Print("Donut Contrast             : %f\n",dhDonutContrast);
    Print("Base Core Contrast         : %f\n",dhCoreContrast);  'base
    Print("Core inner diameter        : %f\n",dhCoreInnerDiameter);
    Print("Core outer diameter        : %f\n",dhCoreOuterDiameter);
    Print("Donut inner diameter       : %f\n",dhDonutInnerDiameter);
    Print("Donut Orientation          : %f\n",dhDonutOrientation);
           
    
	Print("\nExperimental parameters\n");
	Print("-------------------------\n\n");
    Print("Minimum stimulus delay     : %f\n",dhMinStimDelay);
    Print("Add'l rand stim delay      : %f\n",dhRandStimDelay);
    Print("Time before contrast change: %f\n",dhDelayBeforeDContrast);
    Print("Time after contrast change : %f\n",dhDurAfterDContrast);
    
    
	Print("\nTuning parameters\n");
	Print("-------------------\n\n");

    Print("Parameter                  : Contrast Change\n");
	Print("Min,Max,#Steps,LogIf1    : %f,%f,%d,%d\n", dhMinDContrast, dhMaxDContrast, dhNContrastLevels%, dhContrastLogProgression%);
	Print("Values: " + dhdContrastValuesStringified$ + "\n");
	Print("\n");
    
    Print("Parameter                  : Core Orientation\n");
    Print("Min,Max,#Steps             : %f,%f,%d\n", dhMinCoreOrientation, dhMaxCoreOrientation, dhNCoreOrientations%);
    Print("Values: " + dhCenterOriValuesStringified$ + "\n");
    Print("\n");
    
    Print("Parameter                  : Donut Outer Diameter Area\n");
    Print("Min,Max,#Steps,LogIf1    : %f,%f,%d,%d\n", dhMinDonutOuterDiameter, dhMaxDonutOuterDiameter, dhNDonutDiameters%, dhDiameterLogProgression%);
    Print("Values: " + dhDonutDiamValuesStringified$ + "\n");
    Print("\n");

    Print("L/R Values: " + dhLRValuesStringified$ + "\n");
    Print("\n");
    
	' close parfile
	FileClose(0);

end;
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func IdleProcessing%()
	var iStatus% := 1;	
    var tTemp;
    var joystickPosition%;
    var joystickVoltage;
    var saccadeResp%;
    var respTime;
    'There are two triggers on both the Frame and FrameSlave channels, one to indicate the start of the delay
    'period, and another 10 ms later (don't know why the second, but it's there).  We just need to note that
    'these have happened and then move on.  They should be synched, so FrameChannel% will suffice
    'FrameChannel% NO LONGER suffices, because Danishes do not put triggers on both Frame and FrameSlave, only
    'the active one
    var tempChannel%;
    if dhShowDonutOnMaster% = 3 then  'determine which channel should have the triggers and search accordingly
        tempChannel% := FrameSlaveChannel%;
    else
        tempChannel% := FrameChannel%;
    endif;
    
    'if no time has passed, wait 1 ms and try again
	tTemp := View(DataWindow%).MaxTime();
    if tTemp = tNow then
        yield(.001);
        return 1;
    else
        tNow := tTemp;
    endif;
    
    
    ' First time through just update tLast to skip first second. Crosstalk on vsg dig outputs leads to erroneous
    ' triggers. Just let those go. 
    if tNow < 1 then
        tLastTrigger := 1;
        return 1;
    endif;    
    
    'Get eye position
    if dhIsHuman% = 0 then
        xEye := View(DataWindow%).ChanMeasure(XChannel%,2,tNow-.006,tNow-.001)*DegreesPerVoltX;
        yEye := View(DataWindow%).ChanMeasure(YChannel%,2,tNow-.006,tNow-.001)*DegreesPerVoltY;
        
        ' Get and display joystick voltage and position
        if dhUseJoystick% = 1 then
            joystickPosition% := View(DataWindow%).GetJoystickPositionX%(joystickVoltage);
        endif;
        
        'But only update eye position/joystick DISPLAY every 5 ms....
        if tNow-tLastUpdate > .005 then
            View(XYWindow%).XYAddData(1,xEye,yEye);
            if dhUseJoystick% = 1 then
                View(XYWindow%).XYAddData(dhChanJoystickPos%, joystickVoltage * dhVCoeff + dhVConst, dhJoystickDisplayY);
            endif;
            tLastUpdate := tNow;
        endif; 
    endif;
    
    
    
    
    'And here's the big ol' state logic loop
    
	docase 
    'combined logic
    case iState% = stateVSGWait% then 
        'Waiting for VSG to indicate it is ready. The indication is a pulse (up, then down, 1 frame apart) on port 6.
        'Ignore any potential button activity while waiting for the VSG to sync up.
        pulseFound% := View(DataWindow%).FindPulseUp%(ReadyChannel%, tLastTrigger+tic, tRise, tFall);
        if pulseFound% = 1 then
            LogStatus("VSGWait", "Got Ready Pulse from VSG at " + str$(tRise));
            Yield(1.0);
            tLastTrigger := tFall;
            if dhIsHuman% = 1 then
                ChangeStateTo(statePreITIEnsureNoButton%, tFall); 'jump to human logic
                FlushButton(tButtonStart,tNow,buttonStatus%,buttonTime);  'ignore any button presses up to tNow, get correct buttonStatus%
            else
                ChangeStateTo(stateMonkeyITI%, tFall);  'jump to monkey logic
            endif;
        else
            if pulseFound% = 0 then  'if a (short) "false" trigger is found, update tLastTrigger so we don't see it again
                LogStatus("VSGWait", "Got FALSE Ready Pulse from VSG at " + str$(tRise));
                tLastTrigger := tFall;
            endif;
        endif;
        
        
    'human logic
    case iState% = statePreITIEnsureNoButton% then 
        'buttonStatus% will have been set by either WhichButton% (below) or FlushButton% (above/below)
        docase
        case pause% = 1 then  'This is the part on Sprockets when we pause
            pausing% := 1;  'set pausing variable
        case pausing% = 1 then  'if we were just pausing and are now exiting a pause
            pausing% := 0;  'unset pausing variable
            FlushButton(tButtonStart,tNow,buttonStatus%,buttonTime);  'and flush out all button events
        case buttonError% = -1 then  'if there is record of a button error
            printlog("Button error found prior to ITI!\n");
            buttonError% := 0;  'erase button error
            FlushButton(tButtonStart,tNow,buttonStatus%,buttonTime);  'and flush out all button events
        case buttonStatus% = 0 then  'if button is not pressed, keep going
            ChangeStateTo(stateITI%, tNow);
        else 'otherwise if button is pressed, wait for button release before ITI
            buttonError% := WhichButton%(tButtonStart,tNow,buttonStatus%,buttonTime);  'update button state until something happens
        endcase;
        
        
    'human logic   
    case iState% = stateITI% then 
        buttonError% := WhichButton%(tButtonStart,tNow,buttonStatus%,buttonTime);  'update button state while waiting through ITI
        docase
        case buttonTime > -1 or buttonStatus% <> 0 or buttonError% = -1 then 'if there is an extraneous button press, flush button and return to ITI
            buttonError% := 0;  'erase any possible button error
            FlushButton(tButtonStart,tNow,buttonStatus%,buttonTime);  'flush button
            ChangeStateTo(statePreITIEnsureNoButton%, tFall);  'and go back to pre-ITI
        case tNow - tStateStart > tInterTrialTime then
            ChangeStateTo(stateXHairUp%, tNow); 'return to combined logic
        endcase;
        
        
    'monkey logic    
    case iState% = stateMonkeyITI% then   'this is ONLY for checking joystick position, eye position is checked later
        if joystickPosition% = JSCenter% or dhUseJoystick% <> 1 then 'don't let the monkey start until the joystick is in the center
            if tNow - tStateStart > tInterTrialTime then
                ChangeStateTo(stateXHairUp%, tNow); 'return to combined logic
            endif;            
        endif;
        
        
    'combined logic        
    case iState% = stateXHairUp% then 

        ' Start trial. Put up crosshairs.  Do not check button until XHair confirmed.
        LogStatus("StartTrial", "Request crosshairs");
        SafeSampleKey("F");
        tLastTrigger := tStateStart;  'don't bother looking for the XHair before this state began
        ChangeStateTo(stateWaitForXHairOn%, tNow);
        
        
    'combined logic
    case iState% = stateWaitForXHairOn% then 
        if View(DataWindow%).FindRisingEdge%(FixationPointChannel%, tLastTrigger, tTrigger) = 0 then
            ' Fixation point is up
            LogStatus("WaitForXHairOn", "Crosshair on at " + str$(tTrigger) + "\n");
            tLastTrigger := tTrigger;
            if dhIsHuman% = 1 then
                ChangeStateTo(stateCheckButtonDuringXHair%, tTrigger); 'jump to human logic
            else
                DrawStim(1);	' this draws the location of the fixpt.
                ChangeStateTo(stateWaitForAcquisition%, tTrigger);  'jump to monkey logic
            endif;            
        endif;
        
        
    'human logic
    case iState% = stateCheckButtonDuringXHair% then  'this state will last for exactly one button check - was there a premature press or not?
        'last time we checked the button, nothing was pressed
        buttonError% := WhichButton%(tButtonStart,tNow,buttonStatus%,buttonTime);
        if buttonTime > -1 then  'if there is any press
            printlog("Premature button press found during XHair onset!\n");
            SafeSampleKey("X");  'Removes XHair
            'ChangeStateTo(statePreITIEnsureNoButton%, tNow);  'not checking for Xhair off, if that's a problem...
            ChangeStateTo(stateWaitForBlank%, tNow);  'jump to combined logic
            FlushButton(tButtonStart,tNow,buttonStatus%,buttonTime);  'after flushing button
        else 'move forward
            ChangeStateTo(stateWaitInitDown%, tNow);
        endif;
                
        
    'human logic
    case iState% = stateWaitInitDown% then
        ' Wait for button press to initiate trial
        buttonError% := WhichButton%(tButtonStart,tNow,buttonStatus%,buttonTime);

        docase
        case buttonStatus% = 1 then  
            LogStatus("WaitInitDown", "Init Button Pressed (Left)");
            SampleText("Init Press Left",buttonTime);
            ChangeStateTo(stateWaitInitUpL%, tNow);
        case buttonStatus% = 2 then  
            LogStatus("WaitInitDown", "Init Button Pressed (Right)");
            SampleText("Init Press Right",buttonTime);
            ChangeStateTo(stateWaitInitUpR%, tNow);
        case buttonError% = -1 then  'if there's an error
            printlog("Error in button while waiting for trial init press!\n");
            buttonError% := 0;  
            SafeSampleKey("X");  'Removes XHair
            'ChangeStateTo(statePreITIEnsureNoButton%, tNow);  'not checking for Xhair off, if that's a problem...
            ChangeStateTo(stateWaitForBlank%, tNow);  'jump to combined logic
            FlushButton(tButtonStart,tNow,buttonStatus%,buttonTime);  'after flushing button
        endcase        
        
        
    'human logic
    case iState% = stateWaitInitUpL% then
        buttonError% := WhichButton%(tButtonStart,tNow,buttonStatus%,buttonTime);
        docase
        case buttonError% = -1 then
            printlog("Error in button while waiting for trial init release!\n");
            buttonError% := 0;  'erase any possible button error
            SafeSampleKey("X");  'Removes XHair
            'ChangeStateTo(statePreITIEnsureNoButton%, tNow);  'not checking for Xhair off, if that's a problem...
            ChangeStateTo(stateWaitForBlank%, tNow);  'jump to combined logic
            FlushButton(tButtonStart,tNow,buttonStatus%,buttonTime);  'after flushing button
        case buttonStatus% = 0 then
            ' Button is released
            LogStatus("WaitInitUpL", "Init Button Released (Left)");
            SampleText("Init Release Left",buttonTime);
            ChangeStateTo(stateStartSequence%, tNow);
        endcase;
        
        
    'human logic
    case iState% = stateWaitInitUpR% then
        buttonError% := WhichButton%(tButtonStart,tNow,buttonStatus%,buttonTime);
        docase
        case buttonError% = -1 then
            printlog("Error in button while waiting for trial init release!\n");
            buttonError% := 0;  'erase any possible button error
            SafeSampleKey("X");  'Removes XHair
            'ChangeStateTo(statePreITIEnsureNoButton%, tNow);  'not checking for Xhair off, if that's a problem...
            ChangeStateTo(stateWaitForBlank%, tNow);  'jump to combined logic
            FlushButton(tButtonStart,tNow,buttonStatus%,buttonTime);  'after flushing button
        case buttonStatus% = 0 then
            ' Button is released
            LogStatus("WaitInitUpR", "Init Button Released (Right)");
            SampleText("Init Release Right",buttonTime);
            ChangeStateTo(stateStartSequence%, tNow);
        endcase;        
        
        
    'human logic    
    case iState% = stateStartSequence% then 'do not check button press until sequence is complete
        SafeSampleKey("S");
        ChangeStateTo(stateWaitOnsetTrigger%, tNow); 'jump to combined logic
        
        
    'monkey logic    
    case iState% = stateWaitForAcquisition% then
        ' Waiting for eye to fall inside of fixation window
        if Looking%(xEye, yEye) = 1 and (joystickPosition% = JSCenter% or dhUseJoystick% <> 1) then
            LogStatus("WaitForAcquisition", "Eye in fixation window; Joystick OK; request stim");            
            SafeSampleKey("S");
            ChangeStateTo(stateWaitOnsetTrigger%, tNow);  'jump to combined logic
        else 
            if tNow - tStateStart > dhAcquisitionTime then
                ' failed to acquire target. 
                tInterTrialTime := dhAcqFailTime;
                LogStatus("WaitForAcquisition", "Failed.");
                SafeSampleKey("X");
                ChangeStateTo(stateWaitForBlank%, tNow); 'jump to combined logic
            endif;
        endif;         
        
        
    'combined logic
    case iState% = stateWaitOnsetTrigger% then   
        'pulseFound% := View(DataWindow%).FindPulseUp%(FrameChannel%, tLastTrigger, tRise, tFall);
        if View(DataWindow%).FindRisingEdge%(tempChannel%, tLastTrigger, tTrigger) = 0 then
            tLastTrigger := tTrigger + 0.1; 'There is a double-pulse (~10 ms gap) on the Frame Channel, the 0.1 seconds skips that
            ChangeStateTo(stateWaitStimStart%, tNow);
        endif;
        
        
    'combined logic    
    case iState% = stateWaitStimStart% then
        pulseFound% := View(DataWindow%).FindPulseUp%(tempChannel%, tLastTrigger, tRise, tFall);
        if pulseFound% = 1 then
            SampleText("T,"+str$(GetLR(nTrialsCompleted%))+","+str$(dhCoreContrast)+","+str$(GetContrast(nTrialsCompleted%))+","+str$(GetDiam(nTrialsCompleted%))+","+str$(GetOri(nTrialsCompleted%)),tRise);
            LogStatus("StartSequence", "Stim sequence started at " + str$(tRise)); 
            tLastTrigger := tRise; 
            if dhIsHuman% = 1 then
                ChangeStateTo(stateWaitContrastChange%, tNow); 'jump to human logic
            else
                ChangeStateTo(stateHoldFixationToContrastChange%, tNow); 'jump to monkey logic
            endif;
        endif;
        
        
    'human logic
    case iState% = stateWaitContrastChange% then
        pulseFound% := View(DataWindow%).FindPulseUp%(tempChannel%, tLastTrigger, tRise, tFall);
        if pulseFound% = 1 then
            SampleText("CC",tRise);  'don't really need to indicate the trial type
            LogStatus("ContrastChange", "Contrast Change occured at " + str$(tRise)); 
            tLastTrigger := tRise;       
            ChangeStateTo(stateWaitStimOffset%, tNow);
        endif;
        
        
    'human logic    
    case iState% = stateWaitStimOffset% then
        pulseFound% := View(DataWindow%).FindPulseUp%(tempChannel%, tLastTrigger, tRise, tFall);
        if pulseFound% = 1 then
            nMaskTriggersFound% += 1; 
            tLastTrigger := tFall;  
            if nMaskTriggersFound% = nMaskTriggers%+1 then
                ChangeStateTo(stateCheckButtonDuringStim%, tNow);
                nMaskTriggersFound% := 0;
                SampleText("MOff" + Str$(nMaskTriggersFound%),tRise);  'don't really need to indicate the trial type
                LogStatus("Mask Off", "Mask Off occured at " + str$(tRise));
            else
                SampleText("M" + Str$(nMaskTriggersFound%),tRise);  'don't really need to indicate the trial type
                LogStatus("Mask", "Mask " + Str$(nMaskTriggersFound%) + " occured at " + str$(tRise));
            endif;
        endif;
        
        
        
    'human logic    
    case iState% = stateCheckButtonDuringStim% then  'this state will last for exactly one button check - was there a premature press or not?
        'last time we checked the button, nothing was pressed
        buttonError% := WhichButton%(tButtonStart,tNow,buttonStatus%,buttonTime);
        if buttonTime > -1 then  'if there is any press
            printlog("Premature button press found during Stimulus!\n");
            LogStatus("Sequence", "Button during sequence! Trial aborted!");
            SafeSampleKey("X");  'Removes XHair, stimulus
            ChangeStateTo(stateCheckStimOff%, tNow);  'check that the stimulus is off, then repeat
            FlushButton(tButtonStart,tNow,buttonStatus%,buttonTime);  'after flushing button
        else 'move forward
            SafeSampleKey("X");  'Removes XHair, do this BEFORE advancing stimulus!
            advanceStim% := 1;
            'SafeSampleKey("a");  'advance stimulus, we do this now because it takes some time on the VSG end
                                 'and we need to let that time occur during the response window
            
            ChangeStateTo(stateWaitResponse%, tNow);
        endif;        
        
        
    'human logic   
    case iState% = stateWaitResponse% then
        buttonError% := WhichButton%(tButtonStart,tNow,buttonStatus%,buttonTime);
        docase
        case buttonStatus% = 1 then    
            if GetLR(nTrialsCompleted%) = 1 then  'this is reversed in stereoscope, so 1 = left in experimental conditions
                nCorrect% += 1;
                sampleText("Left Response (Correct)",buttonTime);
                printlog("Stimulus Left; Correct left response at %f\n",buttonTime);
            else
                sampleText("Left Response (Wrong)",buttonTime);
                printlog("Stimulus Right; Incorrect left response at %f\n",buttonTime);
            endif
            ChangeStateTo(stateWaitRelease%, tNow);
            'Can't take these repeated lines out of the CASE, because they can't execute if no button press
            nTrialsCompleted% += 1;
            pctCorrect := round(1000*nCorrect%/nTrialsCompleted%)/10;
            printlog("number of trials completed is %d\n",nTrialsCompleted%);
            ToolbarText(str$(nTrialsCompleted%) + "/" + str$(dhNValues%) + " trials completed, " + Str$(pctCorrect) + "% correct.");
        case buttonStatus% = 2 then    
            if GetLR(nTrialsCompleted%) = 0 then  'this is reversed in stereoscope, so 0 = right in experimental conditions
                nCorrect% += 1;
                sampleText("Right Response (Correct)",buttonTime);
                printlog("Stimulus Right; Correct right response at %f\n",buttonTime);
            else
                sampleText("Right Response (Wrong)",buttonTime);
                printlog("Stimulus Right; Incorrect right response at %f\n",buttonTime);
            endif
            ChangeStateTo(stateWaitRelease%, tNow);
            'Can't take these repeated lines out of the CASE, because they can't execute if no button press
            nTrialsCompleted% += 1;
            pctCorrect := round(1000*nCorrect%/nTrialsCompleted%)/10;
            printlog("number of trials completed is %d\n",nTrialsCompleted%);
            ToolbarText(str$(nTrialsCompleted%) + "/" + str$(dhNValues%) + " trials completed, " + Str$(pctCorrect) + "% correct.");
        case buttonError% = -1 then
            printlog("Error in button while waiting for response!\n");
            buttonError% := 0;  'erase button error
            'since we have already advanced the stimulus, we can't repeat a stim on a
            'button error.  I guess we just call it wrong and move on.
            sampleText("Button error, counted as wrong",buttonTime);
            ChangeStateTo(stateCheckStimOff%, tNow);  'skip stateWaitRelease% as we're flushing the button
            FlushButton(tButtonStart,tNow,buttonStatus%,buttonTime);  'flush button
            'Can't take these repeated lines out of the CASE, because they can't execute if no button press
            nTrialsCompleted% += 1;
            pctCorrect := round(1000*nCorrect%/nTrialsCompleted%)/10;
            printlog("number of trials completed is %d\n",nTrialsCompleted%);
            ToolbarText(str$(nTrialsCompleted%) + "/" + str$(dhNValues%) + " trials completed, " + Str$(pctCorrect) + "% correct.");
        endcase
                
        
    'human logic    
    case iState% = stateWaitRelease% then
        buttonError% := WhichButton%(tButtonStart,tNow,buttonStatus%,buttonTime);
        docase
        case buttonStatus% = 0 then
            ChangeStateTo(stateCheckStimOff%, tNow);
        case buttonError% = -1 then
            printlog("Error in button while waiting for response-release!\n");
            buttonError% := 0;  'erase button error
            ChangeStateTo(stateCheckStimOff%, tNow);  'make sure stimulus is off, combined logic
            FlushButton(tButtonStart,tNow,buttonStatus%,buttonTime);  'after flushing button
        endcase
        
        
    'monkey logic    
    case iState% = stateHoldFixationToContrastChange% then
        docase
        case Looking%(xEye, yEye) = 0 then
            LogStatus("HoldFixationPreContrastChange", "Fixation broken, aborting trial.");
            tInterTrialTime := dhHoldFailTime; 
            SampleText("-");
            SafeSampleKey("X");  'turn off fixpt on fixation failure
            ChangeStateTo(stateCheckStimOff%, tNow); 'jump to combined logic
        case joystickPosition% <> JSCenter% and dhUseJoystick% = 1 then
            LogStatus("HoldFixationPreContrastChange", "Joystick moved, aborting trial.");
            tInterTrialTime := dhHoldFailTime; 
            SampleText("-");
            SafeSampleKey("X");  'turn off fixpt on joystick failure
            ChangeStateTo(stateCheckStimOff%, tNow); 'jump to combined logic
        else 
            pulseFound% := View(DataWindow%).FindPulseUp%(tempChannel%, tLastTrigger, tRise, tFall);
            if pulseFound% = 1 then
                SampleText("CC",tRise);  'don't really need to indicate the trial type
                LogStatus("ContrastChange", "Contrast Change occured at " + str$(tRise)); 
                tStimOn := tRise;
                tLastTrigger := tRise;       
                ChangeStateTo(stateHoldFixationToStimOffset%, tNow);
            endif;
        endcase;       
            
            
    'monkey logic    
    case iState% = stateHoldFixationToStimOffset% then
        docase
        case Looking%(xEye, yEye) = 0 then
            LogStatus("HoldFixationPreStimOff", "Fixation broken, aborting trial.");
            tInterTrialTime := dhHoldFailTime; 
            SampleText("-");
            SafeSampleKey("X");  'turn off fixpt on fixation failure
            ChangeStateTo(stateCheckStimOff%, tNow); 'jump to combined logic
        case joystickPosition% <> JSCenter% and dhUseJoystick% = 1 then
            LogStatus("HoldFixationPreStimOff", "Joystick moved, aborting trial.");
            tInterTrialTime := dhHoldFailTime; 
            SampleText("-");
            SafeSampleKey("X");  'turn off fixpt on joystick failure
            ChangeStateTo(stateCheckStimOff%, tNow); 'jump to combined logic
        else
            pulseFound% := View(DataWindow%).FindPulseUp%(tempChannel%, tLastTrigger, tRise, tFall);
            if pulseFound% = 1 then
                nMaskTriggersFound% += 1; 
                tLastTrigger := tFall;
                if nMaskTriggersFound% <= nMaskTriggers% then  'don't call the final screen a mask
                    SampleText("M" + Str$(nMaskTriggersFound%),tRise);  'don't really need to indicate the trial type
                    LogStatus("Mask", "Mask " + Str$(nMaskTriggersFound%) + " occured at " + str$(tRise));
                endif;
            endif;
            if nMaskTriggersFound% = nMaskTriggers%+1 then  'Note that with the change to add saccade responses
                                                            'the XHair goes blank here but the stimulus continues
                                                            'with a blank screen (or choice points) and we still
                                                            'have to turn it off
                nMaskTriggersFound% := 0;  'reset
                advanceStim% := 1;  'note to advance stimulus in the future
                
                'Where do we go from here?  Which is the way that's clear?
                docase
                case dhUseJoystick% = 0 then  'no response required
                    SampleText("Off" + Str$(nMaskTriggersFound%),tRise);  'tRise will carry over from most recent FindPulseUp% call
                    LogStatus("XHair Off", "XHair Off occured at " + str$(tRise));
                    MonkeySuccess% := 1;  'this trial was correct, only fixation required
                    nTrialsCompleted% += 1;
                    SafeSampleKey("X");  'Turns off blank page, do this BEFORE advancing stimulus!
                    
                    ' djs Update toolbarText here. All other cases its handled in another state....
                    pctCorrect := round(1000*nCorrect%/nTrialsCompleted%)/10;
                    printlog("number of trials completed is %d\n",nTrialsCompleted%);
                    ToolbarText(str$(nTrialsCompleted%) + "/" + str$(dhNValues%) + " trials completed, " + Str$(pctCorrect) + "% correct.");
 
                    ChangeStateTo(stateCheckStimOff%, tNow); 'jump to combined logic
                case dhUseJoystick% = 1 then  'use joystick for response
                    SampleText("Off" + Str$(nMaskTriggersFound%),tRise);  'tRise will carry over from most recent FindPulseUp% call
                    LogStatus("XHair Off", "XHair Off occured at " + str$(tRise));
                    SafeSampleKey("X");  'Turns off blank page, do this BEFORE advancing stimulus!
                    ChangeStateTo(stateWaitJoystickResponse%, tNow); 'move to state checking for response
                case dhUseJoystick% > 1 then  'use saccade for response
                    SampleText("CP" + Str$(nMaskTriggersFound%),tRise);  'tRise will carry over from most recent FindPulseUp% call
                    LogStatus("Choice Points", "Choice Points up at " + str$(tRise));
                    'wait to do SafeSampleKey("X")
                    ChangeStateTo(stateWaitSaccadeResponse%, tNow);
                endcase;
            endif;
        endcase;
        
        
    'monkey logic        
    case iState% = stateWaitJoystickResponse% then
        docase
        case joystickPosition% <> JSCenter% then
            respTime := View(DataWindow%).MaxTime();
            docase
            case GetLR(nTrialsCompleted%) = 0 and joystickPosition% = JSRight% then 'right stimulus
                MonkeySuccess% := 1;
                nCorrect% += 1;
                sampleText("Right Response (Correct)",respTime);
                printlog("Stimulus Right; Correct right response at %f\n",respTime);
            case GetLR(nTrialsCompleted%) = 0 and joystickPosition% = JSLeft% then 'right stimulus
                MonkeySuccess% := 0;
                sampleText("Left Response (Wrong)",respTime);
                printlog("Stimulus Right; Incorrect left response at %f\n",respTime);
            case GetLR(nTrialsCompleted%) = 1 and joystickPosition% = JSRight% then 'left stimulus
                MonkeySuccess% := 0;
                sampleText("Right Response (Wrong)",respTime);
                printlog("Stimulus Left; Incorrect right response at %f\n",respTime);
            case GetLR(nTrialsCompleted%) = 1 and joystickPosition% = JSLeft% then 'left stimulus
                MonkeySuccess% := 1; 
                nCorrect% += 1;
                sampleText("Left Response (Correct)",respTime);
                printlog("Stimulus Left; Correct left response at %f\n",respTime);
            endcase
            nTrialsCompleted% += 1;
            pctCorrect := round(1000*nCorrect%/nTrialsCompleted%)/10;
            printlog("number of trials completed is %d\n",nTrialsCompleted%);
            ToolbarText(str$(nTrialsCompleted%) + "/" + str$(dhNValues%) + " trials completed, " + Str$(pctCorrect) + "% correct.");
            ChangeStateTo(stateCheckStimOff%, tNow); 'jump to combined logic
        case tNow > tStateStart + dhResponseWindow then
            LogStatus("WaitJoystickResponse", "No response after response window closed at " + str$(tNow) + "\n");
            'nTrialsCompleted% += 1;  'do not advance
            advanceStim% := 0;  'undo our call to advance stimulus.  Will use same stimulus if no response
            MonkeySuccess% := 0;
            ChangeStateTo(stateCheckStimOff%, tNow); 'jump to combined logic (no response window timeout penalty implemented)
        endcase;
        
        
    'monkey logic
    case iState% = stateWaitSaccadeResponse% then
        'assign CorrX, etc.
        'Note that the YOffset is always the same for L and R, and therefore there is no difference between correct and
        'incorrect YOffsets.  This will need to be changed if YOffset may vary for L and R in the future.
        if GetLR(nTrialsCompleted%) = 0 then 'right stimulus
            CorrX := FixationX - dhXOffset;
            CorrY := FixationY + dhYOffset;
            WrongX := FixationX + dhXOffset;
            WrongY := FixationY + dhYOffset;
        else  'left stimulus
            CorrX := FixationX + dhXOffset;
            CorrY := FixationY + dhYOffset;
            WrongX := FixationX - dhXOffset;
            WrongY := FixationY + dhYOffset;
        endif;
        'if doing training, "remove" incorrect response location
        'if dhUseJoystick% = 3 then
        '    WrongX := 999999999;  'Yeah, it's not going to get there
        '    WrongY := 999999999;
        'endif;
        'Check for response
        saccadeResp% := SaccadeResponse%(xEye,yEye,CorrX,CorrY,WrongX,WrongY);
        docase
        case saccadeResp% = 1 then 'correct response
            respTime := View(DataWindow%).MaxTime();
            MonkeySuccess% := 1;
            if GetLR(nTrialsCompleted%) = 0 then
                nCorrect% += 1;
                sampleText("Right Response (Correct)",respTime);
                printlog("Stimulus Right; Correct right response at %f\n",respTime);
            else
                nCorrect% += 1;
                sampleText("Left Response (Correct)",respTime);
                printlog("Stimulus Left; Correct left response at %f\n",respTime);
            endif;
            nTrialsCompleted% += 1;
            pctCorrect := round(1000*nCorrect%/nTrialsCompleted%)/10;
            printlog("number of trials completed is %d\n",nTrialsCompleted%);
            ToolbarText(str$(nTrialsCompleted%) + "/" + str$(dhNValues%) + " trials completed, " + Str$(pctCorrect) + "% correct.");
            SafeSampleKey("X");  'Removes choice points, do this BEFORE advancing stimulus!
            ChangeStateTo(stateCheckStimOff%, tNow); 'jump to combined logic
        case saccadeResp% = -1 then 'incorrect response
            respTime := View(DataWindow%).MaxTime();
            MonkeySuccess% := -1;  'allow penalty
            if GetLR(nTrialsCompleted%) = 0 then
                sampleText("Left Response (Incorrect)",respTime);
                printlog("Stimulus Right; Incorrect left response at %f\n",respTime);
            else
                sampleText("Right Response (Incorrect)",respTime);
                printlog("Stimulus Left; Incorrect right response at %f\n",respTime);
            endif;
            if dhUseJoystick% = 3 then  'If we are in training saccade mode
                advanceStim% := 0;  'undo our call to advance stimulus, redo stim
            else
                nTrialsCompleted% += 1;  'If not training, allow stimulus to advance, increment trial count
                pctCorrect := round(1000*nCorrect%/nTrialsCompleted%)/10;
                printlog("number of trials completed is %d\n",nTrialsCompleted%);
                ToolbarText(str$(nTrialsCompleted%) + "/" + str$(dhNValues%) + " trials completed, " + Str$(pctCorrect) + "% correct.");
            endif;
            SafeSampleKey("X");  'Removes choice points, do this BEFORE advancing stimulus!
            ChangeStateTo(stateCheckStimOff%, tNow); 'jump to combined logic
        case tNow > tStateStart + dhResponseWindow then
            LogStatus("WaitSaccadeResponse", "No response after response window closed at " + str$(tNow) + "\n");
            'nTrialsCompleted% += 1;  'do not advance
            advanceStim% := 0;  'undo our call to advance stimulus.  Will use same stimulus if no response
            MonkeySuccess% := -1;  'allow penalty
            SafeSampleKey("X");  'Removes choice points (in case they aren't off), do this BEFORE advancing stimulus!
            ChangeStateTo(stateCheckStimOff%, tNow); 'jump to combined logic (no response window timeout penalty implemented)
        endcase;
        
            
    'combined logic            
    case iState% = stateCheckStimOff% then
        'after response window is over, check on status of stimulus offset
        if View(DataWindow%).FindFallingEdge%(StimChannel%, tLastTrigger, tTrigger) = 1 then
            ' Stimulus is down
            LogStatus("StimOff", "Stim completely off at " + str$(tTrigger) + "\n");
            tLastTrigger := tTrigger;
            if advanceStim% = 1 then
                SafeSampleKey("a");  'advance stimulus, VSG will be unresponsive while stim is being constructed, OK to request next fixpt but it may not come up for a bit
                advanceStim% := 0;  'reset
            endif;
            docase
            case nTrialsCompleted% = dhNValues% then  
                ChangeStateTo(stateDone%, tNow);
            case dhIsHuman% = 1 then 
                ChangeStateTo(statePreITIEnsureNoButton%, tTrigger);  'jump to human logic
            case dhIsHuman% = 0 and MonkeySuccess% = 1 then
                MonkeySuccess% := 0;  'reset
                ChangeStateTo(stateReward%, tTrigger);  'jump to monkey logic, reward before next trial
            case dhIsHuman% = 0 and MonkeySuccess% = 0 then
                ChangeStateTo(stateMonkeyITI%, tTrigger);  'jump to monkey logic, next trial
            case dhIsHuman% = 0 and MonkeySuccess% = -1 then
                MonkeySuccess% := 0;  'reset
                ChangeStateTo(stateMonkeyMissPenalty%, tTrigger);  'jump to penalty state
            endcase;
        endif
        
        
    case iState% = stateReward% then
        LogStatus("Reward", "Delivering Reward");
        docase
        case JuicerType% = 1 then  'open-high juicer, dispense based on ms
            DeliverReward();
        case JuicerType% = 2 then  'open-low juicer, dispense based on number of hits
            DeliverRewardNumber();
        endcase;
        JuiceRewardMS := JuiceRewardMS%;
        ChangeStateTo(stateMonkeyITI%, tTrigger+.2+(JuiceRewardMS/1000));
        'Plot spikes for contrast only
        PlotSpikes(tStimOn, tNow, 1, GetContrast(nTrialsCompleted%), nTrialsCompleted%);
        
        
    'monkey logic
    case iState% = stateMonkeyMissPenalty% then
        if tNow > tStateStart + dhMissTime then
            ChangeStateTo(stateMonkeyITI%, tTrigger);  'jump to next trial
        endif;
        
    
    'combined logic (was monkey logic, but now human also checks for XHair off)
    case iState% = stateWaitForBlank% then
        ' we just wait for fix point off signal in this case. 
        if View(DataWindow%).FindFallingEdge%(FixationPointChannel%, tLastTrigger, tTrigger) = 1 then
            ' Fixation point is off
            tLastTrigger := tTrigger;
            if dhIsHuman% = 0 then
                DrawStim(0);	' undraw the location of the fixpt. on CED monitor
                ChangeStateTo(stateMonkeyITI%, tTrigger); 'jump to monkey logic
            else
                ChangeStateTo(statePreITIEnsureNoButton%, tNow); 'jump to human logic
            endif;
        endif;
            
            
    'combined logic
    case iState% = stateDone% then
        Stop%();
        iStatus% := 0;
            
            
    'combined logic    
    else
        ' Unknown state!
        Message("Unknown state=" + str$(iState%));
        halt;

	endcase;

	return iStatus%;
end;
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func WhichButton%(&startT,endT,&bStatus%,&buttonT)
	'Determine which button is pressed, if any
    'Read the button channel, of course
    'Note - another very ad-hoc function, which assumes lots of variables we know exist
    'Man, this function does a lot of stuff, hopefully it will all be useful 
    
    
    'Clear the button press arrays
    button1Press := -1;
    button2Press := -1;
    button1Release := -1;
    button2Release := -1;

    'Each check will return -1 if there are no events of that type, time of event if there is one
    'Check for button 1 (left) press
    button1Press := ChanSearch(ButtonChannel%,8,startT+tic,endT,button1Thresh,buttonHysteresis,buttonMinTime);
    
    'Check for button 1 (left) release
    button1Release := ChanSearch(ButtonChannel%,7,startT+tic,endT,button1Thresh,buttonHysteresis,buttonMinTime); 
    
    'Check for button 2 (right) press
    button2Press := ChanSearch(ButtonChannel%,7,startT+tic,endT,button2Thresh,buttonHysteresis,buttonMinTime);
    
    'Check for button 2 (right) release
    button2Release := ChanSearch(ButtonChannel%,8,startT+tic,endT,button2Thresh,buttonHysteresis,buttonMinTime);
    
    'OK, I'm trying to take out the startT := endT lines when nothing happens - it's possible things are being missed
    'due to buttonMinTime and then skipped because the tiem moves forward.
    
    'Now do a whole bunch of checking to make sure there aren't any errors, update startT and bStatus% if necessary,
    'and hopefully return success
    'This is all nice and complicated, but thorough check and a response matrix of all possible press combos suggests
    'that every contingency is dealt with.  Even under most error conditions it returns a value.  I need to consider
    'what happens in the case that something goes wrong...a flush might not work depending on return values/states and
    'what is expected.
    docase
    case button1Press = -1 and button2Press = -1 and button1Release = -1 and button2Release = -1 then 'nothing happened on this check
        'startT := endT;
        buttonT := -1;
        return 1;
    case bStatus% = 0 then  'initial status is no button pressed
        'check for either button press
        docase
        case button1Press = -1 and button2Press = -1 then  'no button pressed
            'startT := endT;  'no change
            buttonT := -1;
            docase
            case button1Release > -1 then
                printlog("Error!  Button 1 release occurred without a recorded press!\n");
                startT := button1Release;  'fast-forward to time of "false" release
                buttonT := startT;
                return -1;
            case button2Release > -1 then
                printlog("Error!  Button 2 release occurred without a recorded press!\n");
                startT := button2Release;  'fast-forward to time of "false" release
                buttonT := startT;
                return -1;  
            else
                return 1;  'success, no change
            endcase
        case button1Press > -1 and button2Press > -1 then  'both buttons pressed!
            if button1Press < button2Press then
                bStatus% := 1;  'consider it a button 1 press
                startT := button1Press;
                buttonT := startT;
                printlog("Recorded button 1 press at " + Str$(startT) + "\n");
                docase 
                case button1Release > -1 and button1Release < button1Press then
                    printlog("Error!  Button 1 release occurred before Button 1 press when initial status was no button pressed!\n");
                    return -1;
                case button2Release > -1 and button2Release < button1Press then
                    printlog("Error!  Button 2 release occurred before Button 1 press when initial status was no button pressed!\n");
                    return -1;  
                else
                    return 1
                endcase;
            else  'button2Press > button1Press
                bStatus% := 2;  'consider it a button 2 press
                startT := button2Press;
                buttonT := startT;
                printlog("Recorded button 2 press at " + Str$(startT) + "\n");
                docase 
                case button1Release > -1 and button1Release < button2Press then
                    printlog("Error!  Button 1 release occurred before Button 2 press when initial status was no button pressed!\n");
                    return -1;
                case button2Release > -1 and button2Release < button2Press then
                    printlog("Error!  Button 2 release occurred before Button 2 press when initial status was no button pressed!\n");
                    return -1;  
                else
                    return 1
                endcase;
            endif;
        case button1Press > -1 then  'no button 2 press, would trigger prior case
            bStatus% := 1;  'it's a button 1 press
            startT := button1Press;
            buttonT := startT;
            printlog("Recorded button 1 press at " + Str$(startT) + "\n");
            docase 
            case button1Release > -1 and button1Release < button1Press then
                printlog("Error!  Button 1 release occurred before Button 1 press when initial status was no button pressed!\n");
                return -1;
            case button2Release > -1 and button2Release < button1Press then
                printlog("Error!  Button 2 release occurred before Button 1 press when initial status was no button pressed!\n");
                return -1;  
            else
                return 1
            endcase;
        case button2Press > -1 then  'no button 1 press, would trigger prior case
            bStatus% := 2;  'it's a button 2 press
            startT := button2Press;
            buttonT := startT;
            printlog("Recorded button 2 press at " + Str$(startT) + "\n");
            docase 
            case button1Release > -1 and button1Release < button2Press then
                printlog("Error!  Button 1 release occurred before Button 2 press when initial status was no button pressed!\n");
                return -1;
            case button2Release > -1 and button2Release < button2Press then
                printlog("Error!  Button 2 release occurred before Button 2 press when initial status was no button pressed!\n");
                return -1;  
            else
                return 1
            endcase;
        else
            printlog("Error - shouldn't ever get in here!\n"); 'logically all states should be accounted for, but just in case
            startT := max(button1Press,button2Press,button1Release,button2Release);  'just clear it all out
            buttonT := startT;
            docase  'And set the button status based on the last recorded event
            case startT = button1Release or startT = button2Release then
                bStatus% := 0;
            case startT = button1Press then
                bStatus% := 1;
            case startT = button2Press then
                bStatus% := 2;
            endcase;
            return -1;
        endcase;
            
    case bStatus% = 1 then  'initial status is LEFT button pressed
        'check for left button release
        docase
        case button1Release > -1 then
            bStatus% := 0;  'Button is released
            startT := button1Release;
            buttonT := startT;
            printlog("Recorded button 1 release at " + Str$(startT) + "\n");
        case button1Press > -1 or button2Press > -1 or button2Release > -1 then
            printlog("Error!  Recorded something other than button 1 release when button 1 believed to be pressed!\n");
            startT := max(button1Press,button2Press,button2Release);
            buttonT := startT;
            docase
            case startT = button1Press then
                bStatus% := 1;
            case startT = button2Press then
                bStatus% := 2;
            case startT = button2Release then
                bStatus% := 0;
            endcase;
            return -1;
        else
            'startT := endT;  'no change 
            buttonT := -1;            
        endcase;
        
        'check for crazy errors
        docase
        case button1Press > -1 and button1Press < button1Release then
            printlog("Error!  Button 1 press occurred before release when initial status was Button 1 down!\n");
            return -1;
        case button2Press > -1 and button2Press < button1Release then
            printlog("Error!  Button 2 press occurred before Button 1 release when initial status was Button 1 down!\n");
            return -1;
        case button2Release > -1 and button2Release < button1Release then   
            printlog("Error!  Button 2 release occurred before Button 1 release when initial status was Button 1 down!\n");
            return -1;
        case button1Release = -1 and (button1Press > -1 or button2Press > -1 or button2Release > -1) then
            printlog("Error!  Button 1 release expected, another event detected!\n");
            return -1;
        else
            return 1;  'success
        endcase;
    
    case bStatus% = 2 then  'initial status is RIGHT button pressed
        'check for right button release
        docase
        case button2Release > -1 then
            bStatus% := 0;  'Button is released
            startT := button2Release;
            buttonT := startT;
            printlog("Recorded button 2 release at " + Str$(startT) + "\n");
        case button1Press > -1 or button2Press > -1 or button1Release > -1 then
            printlog("Error!  Recorded something other than button 2 release when button 2 believed to be pressed!\n");
            startT := max(button1Press,button2Press,button1Release);
            buttonT := startT;
            docase
            case startT = button1Press then
                bStatus% := 1;
            case startT = button2Press then
                bStatus% := 2;
            case startT = button1Release then
                bStatus% := 0;
            endcase;
            return -1;
        else
            'startT := endT;  'no change
            buttonT := -1;            
        endcase;
        
        'check for crazy errors
        docase
        case button2Press > -1 and button2Press < button2Release then
            printlog("Error!  Button 2 press occurred before release when initial status was Button 2 down!\n");
            return -1;
        case button1Press > -1 and button1Press < button2Release then
            printlog("Error!  Button 1 press occurred before Button 2 release when initial status was Button 2 down!\n");
            return -1;
        case button1Release > -1 and button1Release < button2Release then   
            printlog("Error!  Button 1 release occurred before Button 2 release when initial status was Button 2 down!\n");
            return -1;
        case button2Release = -1 and (button1Press > -1 or button2Press > -1 or button1Release > -1) then
            printlog("Error!  Button 2 release expected, another event detected!\n");
            return -1;
        else
            return 1;  'success
        endcase;
        
    endcase;
    

end;
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

proc FlushButton(&startT,endT,&bStatus%,&buttonT)
    'Used to flush out the status of the button until all button events are in the past relative to endT (typically tNow)
    'Useful in the case of a button error, to just clear out and start over
    while buttonT > -1 do
        WhichButton%(startT,endT,bStatus%,buttonT);
    wend;
    printlog("Button Flush complete at " + Str$(endT) + "\n");
    'When this is done we will have no idea when the last event occured or necessarily what it was, but bStatus% 
    'ought to be correct for time endT and we will be ready to try reading the button again.
end


func GetContrast(nTrials%)  
    return dhdContrastValues[dhStimulusIndices%[nTrials%]];
end;

func GetLR(nTrials%)  
    return dhLRValues[dhStimulusIndices%[nTrials%]];
end;

func GetDiam(nTrials%)  
    return dhDonutDiamValues[dhStimulusIndices%[nTrials%]];
end;

func GetOri(nTrials%)  
    return dhCenterOriValues[dhStimulusIndices%[nTrials%]];
end;


' Used to hard-quit from toolbar. This will close data files without saving!!! 
' It is important that this function be disabled once sampling is started!!!

func Quit%()
	FileClose(-1,-1);
	return 0;
end;

'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Put a vector of numbers into a comma separated string
Func StringifyProgression$(n%, vec[], ind%[])
	var s$;
	var i%;
	for i% := 0 to n%-1 do
		if i% > 0 then 
			s$ += ",";
		endif
		s$ += str$(vec[ind%[i%]]);
	next
	return s$;
end;

'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Turn a vector of 0/1 into a comma separated string of L/R
' This is about as adhoc of a function as you can get
' Not being clever about this - anything non-zero will give "R" but that won't ever happen BECAUSE THIS IS
' AS ADHOC OF A FUNCTION AS YOU CAN GET AND IF YOU TRY TO USE IT FOR ANYTHING OTHER THAN ITS INTENDED
' PURPOSE YOU ARE A FOOL and now on top of that it doesn't even get used here.
Func StringifyProgressionLR$(n%, vec[], ind%[])
	var s$;
	var i%;
	for i% := 0 to n%-1 do
		if i% > 0 then 
			s$ += ",";
		endif
        if vec[ind%[i%]] = 0 then
            s$ += "L";
        else
            s$ += "R";
        endif;
	next
	return s$;
end;
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc ChangeStateTo(stateTo%, tStart)
    'var tempState$;
	iState% := stateTo%;
	if tStart > 0 then 
        tStateStart := tStart; 
    endif;
    
    'Being terribly verbose about this to track stuff down, may well remove once tracking downing is done.
'    docase
'    case iState% = 0 then
'        tempState$ := "stateVSGWait%";
'    case iState% = 1 then
'        tempState$ := "stateXHairUp%";
'    case iState% = 2 then
'        tempState$ := "stateWaitForXHairOn%";
'    case iState% = 3 then
'        tempState$ := "stateWaitInitDown%";
'    case iState% = 4 then
'        tempState$ := "stateWaitInitUpL%";
'    case iState% = 5 then
'        tempState$ := "stateWaitInitUpR%";
'    case iState% = 6 then
'        tempState$ := "stateStartSequence%";
'    case iState% = 7 then
'        tempState$ := "stateWaitOnsetTrigger%";
'    case iState% = 8 then
'        tempState$ := "stateWaitStimStart%";
'    case iState% = 9 then
'        tempState$ := "stateWaitResponse%";
'    case iState% = 10 then
'        tempState$ := "stateWaitRelease%";
'    case iState% = 11 then
'        tempState$ := "stateDone%";
'    case iState% = 12 then
'        tempState$ := "stateITI%";
'    case iState% = 13 then
'        tempState$ := "statePreITIEnsureNoButton%";
'    case iState% = 14 then
'        tempState$ := "stateCheckButtonDuringXHair%";
'    case iState% = 15 then
'        tempState$ := "stateWaitContrastChange%";
'    case iState% = 16 then
'        tempState$ := "stateWaitStimOffset%";
'    case iState% = 17 then
'        tempState$ := "stateCheckButtonDuringStim%";
'    case iState% = 18 then
'        tempState$ := "stateCheckStimOff%";
'    else
'        tempState$ := "UNKNOWN!!!";
'    endcase
'    printlog("State has been changed to " + tempState$ + " at t = " + Str$(tStart) + "\n");
end;

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Looking%(EyePosX,EyePosY)
	'Determine if the eye position is within the fixation window
    if dhIsHuman% = 1 or alwaysLooking% = 1 then 
        return 1; 
    endif;
	if (Pow(EyePosX-FixationX,2) + Pow(EyePosY-FixationY,2)) <= Pow(WindowRadius,2) then return 1; else return 0; endif
end;

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func SaccadeResponse%(EyePosX,EyePosY,CorrX,CorrY,WrongX,WrongY)
	'Determine if the eye position is within one of two possible response window
    if dhIsHuman% = 1 or alwaysLooking% = 1 then 
        return 1; 
    endif;
    docase
	case (Pow(EyePosX-CorrX,2) + Pow(EyePosY-CorrY,2)) <= Pow(dhChoicePointRadius,2) then 
        return 1;  'wrong
    case (Pow(EyePosX-WrongX,2) + Pow(EyePosY-WrongY,2)) <= Pow(dhChoicePointRadius,2) then
        return -1;  'wrong
    else
        return 0;  'no response
    endcase
end;

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Juice%()  'note that this function is only used for Toolbar-based juice delivery
    if JuicerType% = 1 then  'open-high juicer, dispense based on ms
        DeliverReward();
    else
        if JuicerType% = 2 then  'open-low juicer, dispense based on number of hits
            DeliverRewardNumber();
        endif;
    endif;
    return 1;
end;

'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' DrawStim
' 
' Draws stimulus in xy window (iDraw%==1) or blanks it (0). 
proc DrawStim(iDraw%)

	if iDraw% > 0 then
		var xstim, ystim;
		xstim := FixationX;
		ystim := FixationY;

		' Draw stimulus in xy window
		View(XYWindow%).XYAddData(iStimChannel%, xstim, ystim);
	else 
		' erase the stim and the window from xy view
		View(XYWindow%).XYDelete(iStimChannel%);
	endif

end;


func SelectWavemarkDialog%()
	var iReturn%:=1;
	var i%;
    var whichWaveMark% := 1;
	DlgCreate("Select Wavemark");
	DlgInteger(1, "Input Wavemark to view, -1 for all", -1, 256);  'max is based on highest possible wavemark value
    
	i% := DlgShow(whichWaveMark%);

	if i% = 1 then
		PrintLog("SelectWavemarkDialog - user hit OK\n");
        for i% := 0 to dhNWavemarks%-1 do  'for each wavemark channel
            View(DataWindow%).MarkMask(i%+1,0,0,-1);  'exclude all codes on layer 0
            View(DataWindow%).MarkMask(i%+1,0,1,whichWaveMark%);  'then include requested code (or all, if -1) on layer 0
        next;       
	endif;
	if i% = 0 then
		PrintLog("SelectWavemarkDialog - user hit Cancel\n");
	endif;
    'PrintLog("Return value is %d\n", iReturn%);  'always return 1, so don't bother reporting this
	return iReturn%;
end;

proc TuningCurveLabels(iport%)
    
'to be done    
    
'    var s$;
'    s$ := "Port " + str$(iport%);

'    WindowTitle$("Dots, Orientation Tuning - " + s$);
'    XUnits$("Orientation (degrees)");
'	 ChanTitle$(1, "Chan 1");
'    XRange(tunDotsMinOrientation, tunDotsMaxOrientation);
    
end;

proc PlotSpikes(t1, t2, vOnOff%, x, index%)
	var rate;
    var i%;
    
	for i% := 0 to dhNWavemarks%-1 do
		rate := View(DataWindow%).Count(i%+1, t1, t2)/(t2-t1);
		if rate >= 0 then
			if vOnOff% = 1 then
				View(TuningWindow%[i%]).XYAddData(1, x, rate);    ' channel 1 is data; channel 2 is background
			endif
			' NOTE: IGNORING BACKGROUND HERE FOR THE TIME BEING. 
	    endif       
	next
end;