
'This script will be stripped from StarSac2.s2s, and possibly other scripts like ConteTaskSaccade.s2s as well.
'Here we are implementing the "Chicago" task, whose introduction has been delayed as we get the Purkinje eyetracker
'online.  The idea of the Chicago task is that following a central fixation, the animal will be cued to saccade to
'a peripheral target, but *during the saccade* to said target, the target will be removed and placed in a second
'location, and the animal will have to saccade to the second location for reward.  This means that we need to be
'able to quickly detect a saccade - though I believe that a simple central fixation break should be enough.  If the
'animal breaks central fixation and does *not* end up in the intended first-saccade location by a particular time, 
'then the trial should be aborted. Presumably a minimal stay in the first-saccade location will be required (long 
'enough to plan the second saccade) and then a saccade to the second location should be rewarded.

'OK, the plan here is being altered (pray I do not alter it again).  The ORIGINAL design of this task presented a
'T1 target, waited for the animal to saccade to the T1 target, and then during the saccade removed the T1 target 
'and replaced it with a T2 target.  The idea was that a manipulation of an efference copy signal (in this case
'from V1 into the pulvinar) would cause the animal's internal representation of gaze direction to be faulty on
'account of the manipulated efference copy, and that this faulty internal representation would result in a change
'in the saccade to T2.  This was based on a prior result where manipulation of an efference copy signal from SC
'going to FEF (manipulated in the intermediate location of medial dorsal thalamus) brought about just such an
'effect.  However, one very big difference between the planned design and the design of the SC-MD-FEF task was
'that in the SC-MD-FEF task the T1 and T2 targets were BOTH presented during fixation and both were removed prior
'to the double saccade.  This made the task in effect a working memory task, where the presumption is that a
'faulty internal representation of gaze direction at T1 (in fact the first saccade was completed correctly) 
'resulted in the second saccade attempting to compensate for a perceived undershoot in the internal representation.
'The problem that I identified is that under our original design, the animal WOULD NOT KNOW where the T2 was, and
'therefore where to direct the second saccade, until after arriving at the T1 point.  At that point, my intuition
'is that it does not matter at all whether the internal representation is faulty, because the T2 saccade vector
'must be calculated from the current eye position, whether the internal representation of that eye position is
'faulty or not.  As an example, assume fixation is at (0,0).  The T1 is placed at (5,0).  When the animal saccades
'to (5,0) we manipulate the efference copy of the saccade; let's assume that the internal representation places
'the end of the first saccade at (3,0) instead of (5,0).  Now, we place the T2 at (5,5) - the correct saccade is
'five degrees up.  If the animal's internal representation is correct, they will saccade to (5,5).  But if the
'animal's internal representation tells it that its gaze direction is at (3,0), then the animal will believe that
'the T2 is at (3,5) and the correct saccade is...five degrees up.  Same saccade.  It's the working memory component
'of the task that makes this manipulation work.  The animal plans a saccade to (5,0) and then a second saccade to
'(5,5).  When the first saccade completes and the animal believes it has ended up at (3,0) - even though it is 
'actaully at (5,0) - it should compensate on the second saccade by adding two degrees of rightward saccade to try
'to reach the second target.  (Of course, this only works if the system that the animal uses to represent the
'double saccade is "Location 1"/"Location 2"...if the animal uses "Saccade vector 1"/"Saccade vector 2" then the 
'animal would presumably have little reason to refer to the internal representation of gaze direction!)
'
'Long story short, we don't need to perform the difficult task of dropping the T1 during the saccade, instead we
'need to make sure the double saccade is planned before stimulus presentation.  The tricky question now is WHEN
'TO PERFORM THE JAWS MANIPULATION?  The SC-MD-FEF manipulation would appropriately be done during the first saccade
'to damage the efference copy of the saccade (generated from SC).  But note that in that experiment they used
'muscimol, so there was no temporal precision of the block.  But if we are blocking V1 efference copy through
'pulvinar, there doesn't seem to be any reason that V1 would be active during the saccade, because the T1 (which
'is to be located in the JAWS field) will not be present in the JF during that time.  So what would V1 be signaling?
'We presumably want to block during the T1 presentation...which won't block saccade information, so what will it be
'blocking?  This is set up for failure.

'The task has changed ever so slightly, and so let me roll it out yet again:
'
'1) Fixation up
'2*) Acquire fixation
'    Hold time
'3*) T1 Up - T1 will be a grating (orientation from recorded neuron)
'    Delay time
'4*) T2a and T2b up - these will be gratings, one with the same orientation as T1, the other orthogonal.
'    Delay time
'5*) All Ts down (but fixation still up)
'    Delay time
'6*) Fixation down (saccade to T1 allowed)
'    Wait saccade T1 and hold
'7*) Saccade T1 complete
'    Wait saccade T2 and hold
'8) Saccade T2 complete
'9) Reward if correct (what is reward case for JAWS?  The saccade may miss!  IMPORTANT POINT)
'
'Stars indicate periods during which JAWS would be allowable.
'
'We can totally just do a drop-down for JAWS start and JAWS end with start options of "None", "Fixation Acquired",
'"Targets Up", "Targets Down", "Saccade 1 Allowed", "Saccade 1 Complete", then another drop down for JAWS off starting
'with "None" and offset 1 including "Saccade 2 Complete".  Obviously most of these would never be used, but it's easy
'enough to keep things flexible.  BUT we do have to think about the fact that we don't want to have the JAWS on for
'too long, I think Henry would prefer 500 ms or less per trial, so that would make four straight states not really
'plausible.  Probably only during state 3, unless 2 is short.  Even then, maybe don't want to JAWS on a trial when the
'animal might not actually start the trial.
'
'So T1 is in the JAWS field - not clear whether it is jittering.
'T2a and T2b need to be in the same hemifield, I am going to insist opposite quadrant
'Marty says that all four positions (X,Y for each T2) are to be set independently by the experimenter
'We have to be able to mirror those as well - that mirror is going to be L/R, and I don't want to hear any objection

'Another thing, we have to have a training pathway.  Should look something like this:
'Assume we can start the movie with S (I don't recall if that's the letter)
'The basic scheme would go:
'"F", acquisition, wait1, "S", (wait2, "f",) saccade1, (wait3, saccade2,) "X"
'I think that would work for anything.
'Fix Up - T1 Up - Allow Saccade1   First step allows saccade ASAT, skips both optional paths 
'Fix Up - T1 Up - Fix Down - Allow Saccade1   Next step requires hold of WAIT2 (start at 0, increase), allows saccade once fix is down
'                                            Here T1 Up (movie duration) is longer than WAIT2
'Fix Up - T1 Up - Fix Down - Allow Saccade1 - T2 Up After Saccade1 - Allow Saccade2   Maybe this is where we introduce the T2 (not all trials)
'Fix Up - T1 Up - Fix Down - T2 Up And Allow Saccade1 - Allow Saccade2
'Fix Up - T1 Up - T2 Up - Fix Down - Allow Saccade1 - Allow Saccade2
'Fix Up - T1 Up - T2 Up - Fix Down - Allow Saccade1 - T1/T2 Down - Allow Saccade2
'Fix Up - T1/T2 Up - T1/T2 Down - Fix Down - Allow Saccades   As WAIT2 gets longer, the targets come down before saccade allowed

'These break down basically to:
'Learn to saccade
'Learn to hold until release signal before saccade
'Learn to double saccade with second target revealed after first saccade
'Learn to double saccade with second target shown overlapping --> simultaneously in time
'Learn to saccade to missing targets

'1) Saccade to T1 anytime (SR 1 [for holding until T1 up], full reward S1)
'2) Saccade to T1 after fixpt release (SR 1 [fade], SR 2 [hold until fixpt release], full reward S1)
'3) T2a up after saccade to T1 (release req??; SR 1/2 [fade], SR 3 [for S1], full reward S2)
'4) T2a/b up after saccade to T1 (fade in T2b?) (SR 1/2 should be gone by now, SR 3 [fade])
'5) T2a/b up before fix down (delay to fix down could start at 0) (full task to present targets)
'6) T1 + T2a/b contrast down before fix down 
'7) T1 + T2a/b down before fix down = full task
'Full task

'This does not create a JAWS problem because we will *never* JAWS during training.

'OK, we're changing the task AGAIN and not only that but we've got two different scenarios.  And the training may
'be significantly harder.  So let me outline the new new.
'
'We want the presence of a stimulus in the JAWS field to effectively be the saccade trigger.  The previous designs
'would have the JAWS field stimulus off of the screen before the saccade trigger, which kind of makes things iffy
'when we're relying on V1 layer-5 activity to be triggering the saccade (so that we can silence the V1 layer-5
'activity at the level of the pulvinar and hopefully disrupt efference copy of the saccade command).  But of course
'we need to disrupt the efference copy of the FIRST saccade to see the effect in the SECOND.  This brought Henry to
'suggest an inversion of the presentation order, where we first present the T2(s) and then subsequently have the T1
'in the JAWS field as a stimulus that is 1) being discriminated and 2) drives the S1.  As such, we have two designs
'we are choosing between: 1) Two T2s of orthogonal orientation followed by a T1, S1 to T1, S2 to the T2 orientation
'match; 2) One T2 followed by two T1s of orthogonal orientation (one in the JAWS field, one the other hemifield), 
'S1 to T1 orientation match, S2 to T2.  We're having a lot of trouble deciding on which of these designs to go with
'so I'm guessing I have to make both.
'
'It's not a huge deal to switch up some of these variables, and the task design (and even the full dialog) has not
'yet been completed, so that's no biggie.  The issue is going to be the training.  I had a nice training design and
'we're going to have to do something completely different.  I worry about having an intermediate saccade introduced
'into the training scheme.  I think we have to teach S1, then teach S1-S2, with only one stimulus (T2 or T1,
'depending on the task) then introduce the second stimulus and the contingency.  This probably looks at least somewhat 
'different for the two tasks.
'
'Task 1 (two T2s, one T1)
'1) Saccade to T1 (could be left or right hemifield, one is in JAWS field, use two orthogonal orientations)
'2) After S1, introduce iso-ori T2 only (with two possible locations) and give full reward for S2
'3) Fade in ortho-ori T2
'   At this point the animal is doing a two-saccade task with T1 determining which T2, all stimuli on screen
'4) Timeshift T2s so they appear at same time as T1, then keep going so they appear before T1 
'5) Begin fade-out of stimuli when S1 initiated (alternately may have T1 duration timed?)
'   We may want the fixpt to go off when the T1 goes up, from the very beginning, to encourage an immediate S1,
'   the only issue here is if that might encourage an express saccade.
'
'I think that would train Task 1.
'
'Task 2 (two T1s, one T2)
'1) Saccade to a single T1 (could be left or right hemifield, one is in JAWS field, use two orthogonal orientations)
'2) After S1, introduce iso-ori T2 only (one location) and give full reward for S2
'3) Fade in ortho-ori T1 opposite to iso-ori T1
'   At this point the animal is doing a two-saccade task with T2 determining which T1, all stimuli on screen
'4) Timeshift T2s so they appear at same time as T1, then keep going so they appear before T1 
'5) Begin fade-out of stimuli when S1 initiated (alternately may have T1 duration timed?)
'   We may want the fixpt to go off when the T1 goes up, from the very beginning, to encourage an immediate S1,
'   the only issue here is if that might encourage an express saccade.
'
'Honestly, the training is about the same.  Really the only difference is that in step 2 we have either one or
'two possible locations for the T2, and in step 3 we fade in a stimulus at a different location (T2 compete vs.
'T1 compete).  
'
'Fucking we might change this again.  MICROSTIM.  Henry says that there's only one thing that is KNOWN to
'generate a saccade from V1, and that's microstim in V1 layer-5.  And we're just HOPING that our other tasks
'will generate a saccade from V1.  So...duh.  We microstim.  We do the one thing that we KNOW will make this
'happen.  And block the efference copy in pulvinar via JAWS.  So the idea would be to up/down a saccade target - 
'and it doesn't really matter what it is - but to hit the animal with a microstim in the JAWS field conicident
'with the release of the fixation point on half the trials.  You would have four trial types: microstim on/off
'and JAWS on/off.  offM/offJ should just be a normal saccade; offM/onJ should produce a normal saccade (we 
'would hope!); onM/offJ should allow the animal to make a correct saccade after accounting for the "unexpected"
'saccade generated from V1 layer-5 via efference copy; onM/onJ should result in the animal making an incorrect 
'saccade, as if the "unexpected" saccade didn't happen, because the efference copy of that saccade is lost.
'
'Like this is the steelman experiment.  1) We KNOW the S1 was generated in V1 layer-5;  2) The primary efference
'copy is almost certainly gonig through pulvinar;  3) Nowhere else in the brain even KNOWS that the saccade is
'going to happen until it happens so there aren't even any higher-level motor commands pending that correspond to
'this saccade.
'
'So how so we train this?  
'
'1) Saccade to T1 (multiple locations?)
'2) Introduce microstim on some trials, T1 stays visible but fixpt goes off (well, super tricky design says
'   maybe fixpt reappears under microstim saccade, if that's reliable enough!)
'3) Fade out T1, hope animal can still do task under microstim conditions
'
'The idea of jumping the fixation point while the microsaccade happens is hilarious.  If those saccades are reliable
'and repeatable and you can slip the fixpt under, they will reacquire as if nothing ever happened!  But then I doubt
'they would know where to saccade...I don't think that's a good idea.
'
'Anyway, if we decide super-tricky is actually super-dumb, and it probably is, the final form of the task is easy
'in terms of VSG because we should be able to play a movie - everything turns off when the fixpt goes down, we can
'just stop the movie.  But the fade during training is going to be hard, I think.  We have to bring down a stimulus,
'advance to a new stimulus, and put it back up.  Iffffffy.
'
'
'
'And noooow, for the yet-another next experiment, we've got Yet Another Next Experiment Going First!  In this version
'of the experiment, we will be doing a single-saccade paradigm.  In the full version of the task, there will be:
'1) Fixation up
'2) Single Grating presented (JF or opposite hemisphere; fix up) 
'3) Gap (fix up)
'4) Two gratings presented (JF and opposite hemisphere; fix up)
'The S2 grating which appears in the same location as the S1 is the target; the S2 grating in the opposite location
'is a distractor; target and distractor are always 90 degrees different in orientation.  If the S2 target is a
'different orientation than S1, the animal will saccade to the target location.  If not, the animal will No-Go.
'A saccade to the distractor location is never rewarded.
'Training method on this is TBD, still puzzling through it.  I think we want to have both Go and No-Go from the jump?
'Or at least very very early.  Training the No-Go case is easiest, because it's just fixation then reward, but maybe 
'there's a case to be made to teach saccade first and then No-Go.  Maybe overthinking...start at full contrast, S1
'and target-loc S2.  Present either 2-sec S1 (reward after stim off = no-go), or 1-sec S1 and 1-sec S2 (allow saccade
'at orientation change and reward for saccade).  Then introduce gap.  Then fade in completely irrelevant S2 distractor.



'Serendipitously, the biggest U.S. hit for the band Chicago was a single titled "Look Away" ("If you see me walking
'by/And the tears are in my eye/Look away, baby look away") so we have a function name.  Well, that's something.


'I think we really kind of want this program to be a "Chicago Suite" that will allow us to do *any* of the Chicago
'style experiments.  But that would basically depend on being able to re-use variables that do "the same thing" and
'to reuse idle loop states that do "the same thing" so we need to plot out both of these...probably Excel will be
'better for this...thinking more about the idle states and maybe we want to have separate experimental "arcs" for
'each individual experiment, as it's going to be difficult to tightly map the various experiments to each other.
'In this experiment, we are going to have to use a "page advance" system, where on each trial we will construct
'multiple pages and then advance through them at appropriate times in the trial sequence. (Note that this is distinct
'from the normal "stimulus advance", which we will also use to go from trial to trial.)  Dan has not yet implemented
'this system, but I don't think it will be very hard for him. But my bottom line is that what these page advances
'correspond to will be very different based on experiment type, and there will be opportunities for opto, and for
'microstim in one experiment, and we'll have to have very different criteria and sampletexting and we should just 
'go for separate experimental arcs in the idle loop.




'Just as a note, the number of trials is growing and I want to keep an eye on it.  Assuming we do 50/50 splits of
'everything, we have:
'1) Loc1Visible/Drop (this changes to one or two saccades - now not sure that the one-saccade reduced task is even on the table)
'2) Loc1To/AwayJF
'3) Opto/No
'
'No idea whether we would want to block opto trials or to randomly distribute them
'
'Reading the grant section again, we may be varying Loc1 a little within the "JAWS field" to prevent anticipation of
'its location - I don't know how big the JAWS field will be but the small area dialog may be useful here to jitter
'things
'
'Gonna kill the small reward, not sure what it was needed for...well, I think the small reward stuff is for training
'If so, could use small reward on fixation hold and/or saccade to target 1
'
'Going to keep the small grid stuff, because it may be useful for "jittering" the Location 1 targets





''''''''''  Include Files ''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

#include "../util/ChannelUtilities.s2s"
#include "../util/UsreyUtil.s2s"
#include "../util/LogUtilities.s2s"
#include "../util/MiscUtilities.s2s"
#include "../util/TrialBlockGen.s2s" 
#include "UsreyDAQ.s2s"
#include "UsreyGratings.s2s"
#include "UsreyFixationPoint.s2s"
'#include "Joystick.s2s"  'We should not need a joystick because we are using saccades!

'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' LookAway script START
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''


''''''''''  Variable Definitions ''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''    

'Experiment Setup Variables
var laExperimentType%;          ' 0-based index to DlgList for experiment selection
var laExperimentLabel$[4];      ' Experiment label for DlgList
laExperimentLabel$[0] := "Single-Saccade GNG";
laExperimentLabel$[1] := "Single-Saccade + Microstim";
laExperimentLabel$[2] := "Double-Saccade, two S1s";
laExperimentLabel$[3] := "Double-Saccade, two S2s";
var laExperimentLabelShort$[4]; ' Short experiment label for registry
laExperimentLabelShort$[0] := "SSGNG";
laExperimentLabelShort$[1] := "SSMicro";
laExperimentLabelShort$[2] := "DS2S1";
laExperimentLabelShort$[3] := "DS2S2";

var nTrainingStageOptsSSGNG% := 5;
var trainingStageOptsSSGNG$[nTrainingStageOptsSSGNG%];
trainingStageOptsSSGNG$[0] := "Saccade to S1 target";
trainingStageOptsSSGNG$[1] := "Introduce S2 target";
trainingStageOptsSSGNG$[2] := "Add Gap between S1/S2 target";
trainingStageOptsSSGNG$[3] := "Fade in S2 distractor";
trainingStageOptsSSGNG$[4] := "Full Task";
'Note that there was a bit of crossed wires in designing this task.  Since there will be no circumstance where
'the animal will be required to saccade to a blank location, there will be no second gap.  There will also not 
'be an explicit saccade release, the animal will "figure out" that it has to go based on the change stimulus.  
'If we decide to ever implement a version where the animal has to saccade to a blank space, we will have to 
'revisit things.


var nTrainingStageOptsSSMicro% := 4;
var trainingStageOptsSSMicro$[nTrainingStageOptsSSMicro%];
trainingStageOptsSSMicro$[0] := "Saccade to target";
trainingStageOptsSSMicro$[1] := "Introduce microstim";
trainingStageOptsSSMicro$[2] := "Fade out target";
trainingStageOptsSSMicro$[3] := "Full Task";

var nTrainingStageOptsDS2S1% := 7;
var trainingStageOptsDS2S1$[nTrainingStageOptsDS2S1%];
trainingStageOptsDS2S1$[0] := "Saccade to S1a";
trainingStageOptsDS2S1$[1] := "S2 up after Saccade to S1a";
trainingStageOptsDS2S1$[2] := "Fade in S1b";
trainingStageOptsDS2S1$[3] := "S2, S1a/b up together";
trainingStageOptsDS2S1$[4] := "S2 up before S1a/b";
trainingStageOptsDS2S1$[5] := "Fade out all stimuli";
trainingStageOptsDS2S1$[6] := "Full Task";

var nTrainingStageOptsDS2S2% := 7;
var trainingStageOptsDS2S2$[nTrainingStageOptsDS2S2%];
trainingStageOptsDS2S2$[0] := "Saccade to S1";
trainingStageOptsDS2S2$[1] := "S2a up after Saccade to S1";
trainingStageOptsDS2S2$[2] := "S2a/b up after Saccade to S1";
trainingStageOptsDS2S2$[3] := "S2a/b, S1 up together";
trainingStageOptsDS2S2$[4] := "S2a/b up before S1";
trainingStageOptsDS2S2$[5] := "Fade out all stimuli";
trainingStageOptsDS2S2$[6] := "Full Task";

var nOptoStages% := 6;
var optoStages$[nOptoStages%];
optoStages$[0] := "Fix: Pre-Stim";  'Holding fixation before Page 1
optoStages$[1] := "Fix: Guide Stim";  'During page 1
optoStages$[2] := "Fix: S1-S2 Gap (GNG only)";  'During Page 2, training step 5-6, GNG only
optoStages$[3] := "Fix: Initiating Stim";  'During Page 2 in double-saccade, Page 3 in GNG, not allowed for microstim
optoStages$[4] := "Fix: Pre-Release Gap";  'After stimulus down in full task, or during Page 2 (pre/during fade) in microstim
optoStages$[5] := "Saccade Release";  'After fixation down, until success/failure/timeout




'Main dialog box variables
var laAlwaysLooking% := 0;      ' Leave = 0 for normal use, set to 1 for testing
var laTrainingStageSSGNG%;      ' 0-based index to DlgList for single-saccade GNG training stages
var laTrainingStageSSMicro%;    ' 0-based index to DlgList for single-saccade microstim training stages                           
var laTrainingStageDS2S1%;      ' 0-based index to DlgList for double-saccade two-S1 training stages
var laTrainingStageDS2S2%;      ' 0-based index to DlgList for double-saccade two-S2 training stages
var laNRepeats%;                ' Overall, how many repeats once we have constructed the entire experiment?
var laNRepeatsLoc1ToJF%;        ' On how many repeats is Location 1 at the defined JAWS Field?
var laNRepeatsLoc1AwayJF%;      ' On how many repeats is Location 1 opposite from the defined JF? (X? Y? Both? Not yet clear.)
var laNRepeatsUseJAWS%;         ' On how many repeats do we use JAWS
var laNRepeatsNoJAWS%;          ' On how many repeats do we NOT use JAWS
var laNRepeatsLoc1Only%;        ' On how many repeats do we present only one stimulus - this is designed for teaching the double saccade, for two LOCATIONS we can fade in
var laNRepeatsLoc1Loc2%;        ' On how many repeats do we present both stimuli - this is designed for teaching the double saccade, for two LOCATIONS we can fade in

var laAnswerWindowDiameter;     ' Diameter of all answer windows
var laLoc1aXDeg := 0;           ' JF, We will always pull this from the stimulus params, can't be set in main dialog
var laLoc1aYDeg := 0;           '
var laGratingOri := 0;          ' Set in stimulus params, is presumed to be best orientation
var laLoc1bXDeg;                ' X position of Location 1b - this is the alternate S1 location (away from JF)
var laLoc1bYDeg;                ' Y position of Location 1b
var laLoc2aXDeg;                ' X position of Location 2a - this is the first S2 location
var laLoc2aYDeg;                ' Y position of Location 2a
var laLoc2bXDeg;                ' X position of Location 2b - this is the second S2 location
var laLoc2bYDeg;                ' Y position of Location 2b
var laContrastFade%;            ' Contrast fade in or fade out, will fade T2b in OR T1/T2a/b out depending on stage, is INTEGER 0-100

var laFixAcquisitionTime;       ' Time allowed to acquire central fixation target before fail trial, seconds
var laFixationDurationMin;		' Time required to maintain central fixation before target presentation begins, seconds (min of range)
var laFixationDurationVar;		' Time required to maintain central fixation before target presentation begins, seconds (variable range)
var laPage1DurationMin;         ' Duration Page 1 is on screen, seconds (min of range)
var laPage1DurationVar;         ' Duration Page 1 is on screen, seconds (variable range)
var laPage2DurationMin;         ' Duration Page 2 is on screen, seconds (min of range)
var laPage2DurationVar;         ' Duration Page 2 is on screen, seconds (variable range)
var laPage3DurationMin;         ' Duration Page 3 is on screen, seconds (min of range)
var laPage3DurationVar;         ' Duration Page 3 is on screen, seconds (variable range)
var laSaccadeReleaseDelayMin;   ' Time to hold between final page DOWN and saccade release, seconds (min of range)
var laSaccadeReleaseDelayVar;   ' Time to hold between final page DOWN and saccade release, seconds (variable range)

var laSacc1AcqTime;             ' Time allowed once released to acquire Location 1, in seconds
var laSacc1HoldTime;            ' Time required to hold Location 1 before saccade to second target allowed.
var laSacc2AcqTime;             ' Time allowed, once arriving at Location 1 (and being released, if applicable), to acquire Location 2, in seconds
var laSacc2HoldTime;            ' Time location 2 must be held before reward, in seconds
var laInterTrialTime;		    ' Blank time following a trial (both successful and failed), seconds
var laAbortPenaltyTime;         ' Penalty time following abort (will then go to ITI)

var laHitsPerSmallReward% := 1; ' For now we will set this to 1, could put it in the dialog if we want
var laMSPerSmallRewardHit%;     ' Setting shorter reward open time for "small rewards"
var laPSmallRewardHoldTarg;     ' Probability of small reward on hold fixation through target presentation
var laPSmallRewardSaccade1;     ' Probability of small reward on correct saccade 1, should instead use full reward on trials with no second saccade
var laPJawsRewardInit;          ' For JAWS trials, we need to reward randomly, will reward at animal's hit rate, but we need an initial value until we can determine hit rate

'Opto variables
var laOptoStartStage%;          ' When does opto start?
var laOptoEndStage%;            ' When does opto end?
var laOptoVoltageOut;           ' Opto voltage level

'Dialog box entry order variables
var laDlgExperimentType%         :=  1;                
var laDlgTrainingStageSSGNG%     :=  2;    
var laDlgTrainingStageSSMicro%   :=  3; 
var laDlgAlwaysLooking%          :=  4;  
var laDlgTrainingStageDS2S1%     :=  5;   
var laDlgTrainingStageDS2S2%     :=  6;
var laDlgNRepeats%               :=  7;
var laDlgNRepeatsLoc1ToJF%       :=  8;
var laDlgNRepeatsUseJAWS%        :=  9;
var laDlgNRepeatsLoc1Only%       := 10;
var laDlgNRepeatsLoc1AwayJF%     := 11;
var laDlgNRepeatsNoJAWS%         := 12; 
var laDlgNRepeatsLoc1Loc2%       := 13;                                
var laDlgAnswerWindowDiameter%   := 14;
var laDlgContrastFade%           := 15;
var laDlgLoc1bXDeg%              := 16;
var laDlgLoc2aXDeg%              := 17;
var laDlgLoc2bXDeg%              := 18;
var laDlgLoc1bYDeg%              := 19;
var laDlgLoc2aYDeg%              := 20;
var laDlgLoc2bYDeg%              := 21;
var laDlgInterTrialTime%         := 22;
var laDlgAbortPenaltyTime%       := 23;
var laDlgFixAcquisitionTime%     := 24;
var laDlgFixationDurationMin%    := 25;
var laDlgPage1DurationMin%       := 26;
var laDlgPage2DurationMin%       := 27;
var laDlgFixationDurationVar%    := 28;
var laDlgPage1DurationVar%       := 29;
var laDlgPage2DurationVar%       := 30;
var laDlgPage3DurationMin%       := 31;
var laDlgSaccadeReleaseDelayMin% := 32;
var laDlgPage3DurationVar%       := 33;
var laDlgSaccadeReleaseDelayVar% := 34;
var laDlgSacc1AcqTime%           := 35;
var laDlgSacc1HoldTime%          := 36;
var laDlgSacc2AcqTime%           := 37;
var laDlgSacc2HoldTime%          := 38;
var laDlgOptoStartStage%         := 39;
var laDlgOptoEndStage%           := 40;
var laDlgOptoVoltageOut%         := 41;
var laDlgPJawsRewardInit%        := 42;                                      
var laDlgMSPerSmallRewardHit%    := 43;
var laDlgPSmallRewardHoldTarg%   := 44;
var laDlgPSmallRewardSaccade1%   := 45;

'Dialog box label variables (these dialog labels will change text based on the task/training stage)
var labelNRepeatsLoc1Only$;
var labelNRepeatsLoc1Loc2$;
var labelNRepeatsLoc1ToJF$;
var labelNRepeatsLoc1AwayJF$;
var labelContrastFade$; 
var labelLoc1bXDeg$;
var labelLoc1bYDeg$;
var labelLoc2aXDeg$;
var labelLoc2aYDeg$;
var labelLoc2bXDeg$;
var labelLoc2bYDeg$;    
var labelFixationDurationMin$;
var labelFixationDurationVar$;
var labelPage1DurationMin$;
var labelPage1DurationVar$;
var labelPage2DurationMin$;
var labelPage2DurationVar$; 
var labelPage3DurationMin$;
var labelPage3DurationVar$; 
var labelSaccadeReleaseDelayMin$;
var labelSaccadeReleaseDelayVar$;

'Dialog box label variable handles (these dialog entries will be toggled on or off)
var hNRepeatsUseJAWS%;
var hNRepeatsNoJAWS%;
var hNRepeatsLoc1Only%;
var hNRepeatsLoc1Loc2%;
var hNRepeatsLoc1ToJF%;
var hNRepeatsLoc1AwayJF%;
var hContrastFade%; 
var hLoc1bXDeg%;
var hLoc1bYDeg%;
var hLoc2aXDeg%;
var hLoc2aYDeg%;
var hLoc2bXDeg%;
var hLoc2bYDeg%;
var hFixationDurationMin%;
var hFixationDurationVar%;
var hPage1DurationMin%;
var hPage1DurationVar%;
var hPage2DurationMin%;
var hPage2DurationVar%; 
var hPage3DurationMin%;
var hPage3DurationVar%;
var hSaccadeReleaseDelayMin%;
var hSaccadeReleaseDelayVar%;
var hSacc1AcqTime%;
var hSacc2AcqTime%;
var hSacc2HoldTime%;
var hOptoVoltageOut%;
var hPJawsRewardInit%;
var hPSmallRewardSaccade1%;

var hTotalTrials%;
var hJAWSFieldLoc%;  'This handle is filled but not actually used

var laTotalTrialsText$;     'Used to place text into the dialog box
var laJAWSFieldLocText$;    'Used to place text into the dialog box

'Non-dialog box variables
var laDoOpto% := 0;                   ' Do optogenetics?
var laDoMicro% := 0;                  ' Do microstim?
var voltageInteger%;                  ' Holds result from vdac32, for passing to sequencer to run opto
var laMaxTrialPerDataPoint% := 100;   ' Seems like more than plenty, used to restrict requested trials at dialog box stage

'Trial variables
const MAXTRIALS% := 5000;
var nTrials%;
var laTarget1Loc%[MAXTRIALS%];                'Trial-by-trial location of saccade target 1; can be 0 (no target, no-go), 1 (target is Loc1a), or 2 (target is Loc1b)
var laTarget2Loc%[MAXTRIALS%];                'Trial-by-trial location of saccade target 2; can be 0 (no saccade 2), 10 (target is Loc2a), or 11 (target is Loc2b)...jumping to 10/11 gives opportunity to draw more stimuli in the S1 period, just in case
var laLocsPresent%[MAXTRIALS%];               'Trial-by-trial indication of locations present, overall.  Is the sum of 1 (Loc1a present), 2 (Loc1b present), 4 (Loc2a present) and 8 (Loc2b present)
var laPage1Draw%[MAXTRIALS%];                 'Trial-by-trial indication of locations present on Page 1, for building trials, drawing in fixation display window, built in same way as laLocsPresent
var laPage2Draw%[MAXTRIALS%];                 'Same, for Page 2
var laPage3Draw%[MAXTRIALS%];                 'Same, for Page 3
var laPage1Fade%[MAXTRIALS%];                 'Trial-by-trial indication of locations faded on Page 1, for building trials, built in same way as laLocsPresent
var laPage2Fade%[MAXTRIALS%];                 'Same, for Page 2
var laPage3Fade%[MAXTRIALS%];                 'Same, for Page 3
var laPage1Ortho%[MAXTRIALS%];                'Trial-by-trial indication of locations in orthogonal on Page 1, for building trials, built in same way as laLocsPresent, relevant in GNG/double saccade
var laPage2Ortho%[MAXTRIALS%];                'Same, for Page 2
var laPage3Ortho%[MAXTRIALS%];                'Same, for Page 3
var laOptoThisTrial%[MAXTRIALS%];             'Trial-by-trial control of whether opto is used
var laMicroThisTrial%[MAXTRIALS%];            'Trial-by-trial control of whether microstim is used
var laInitialST$[MAXTRIALS%];                 'Trial-by-trial initial Sampletext text
'const MAXTARGETPOSITIONS% := 100;             'TODO These variables are for target jitter using the Small Area dialog box, we will probably not be using this, but keep around in case
'var laLoc1Positions[MAXTARGETPOSITIONS%][2];  'possible x,y locations for target 1
'var laLoc2Positions[MAXTARGETPOSITIONS%][2];  'possible x,y locations for target 2
'var laNLoc1Positions% := 0;
'var laNLoc2Positions% := 0;
'var iTargetPoint% := 0;                       'This is an index used to advance the target, not sure how it is different than the trial counter directly above
var laTrialOrder%[MAXTRIALS%];                'The trial order, indices of trials, to be randomized, and we will use it to re-sort all of our trial variables
var tc% := -1;                                'The trial counter, uses zero-index so start at -1, will increment before first use 
var nTrialsStarted%:=0;
var nTrialsSuccess%:=0;
var nTrialsFail%:=0;
var nTrialsAbort% := 0;
var nTrialsStartedJAWS%:=0;                   'Keep separate JAWS/No-JAWS stats so we can determine average reward rate on either
var nTrialsSuccessJAWS%:=0;                   '     as we need to keep a careful eye on percentage of rewards in JAWS case, don't
var nTrialsFailJAWS%:=0;                      '     want that to be very different from No-JAWS case as the animal isn't supposed 
var nTrialsAbortJAWS% := 0;                   '     to figure out what's going on (no stimuli remain on screen)
var nTrialsStartedNoJAWS%:=0;
var nTrialsSuccessNoJAWS%:=0;
var nTrialsFailNoJAWS%:=0;
var nTrialsAbortNoJAWS% := 0;
var pctSuccessJAWS;
var pctSuccessNoJAWS;
'var nTrialsStartedByTarget%[MAXTARGETPOSITIONS%];  'TODO - these are also related to target jitter...
'var nTrialsSuccessByTarget%[MAXTARGETPOSITIONS%];
'var nTrialsFailByTarget%[MAXTARGETPOSITIONS%];
var laPJawsReward;                            'For calculating the JAWS reward probability inside the idle loop

'Eye trace variables
'const MAXEYETRACECOLORS% := 12;
'var laEyeTraceColors%[MAXEYETRACECOLORS%];    ' These are used to draw eyetraces


'Idle loop variables, some of these are similar to dialog box variables but are updated trial-to-trial
var laFixationDuration;			' Time required to maintain central fixation, seconds, randomized trial-to-trial
var laDoOptoThisTrial% := 0;    ' Keep track of trial-by-trial opto
var laDoMicroThisTrial% := 0;   ' Keep track of whether we do microstim trial-by-trial
var laTrialFinalPage%;          ' Determine the final page on this trial, is updated trial-by-trial in stateStartTrial for training step 2 on double saccades (can do either 1 or 2 stimuli)
var laDoTwoSaccades%;           ' If 1, wait for second saccade, wait always happens after fixation down
var laFixDownAfterPage%;        ' After which page does the fixation come down, typically final page except training 2/3 for double saccade
var laSaccadeToBlank%;          ' Set to 1 for final training stage, in this stage "X" will not have a page to bring down
var looking%;                   ' Will keep track of most recent target location viewed
var optoIsOn%;                  ' Keep track of if the laser is actually on
'var laOptoOffMidStimTime;       ' Used to turn off the opto laser mid-stimulus, if required by the timing (is this relevant?)
var Pause% := 0;		        ' When 1, expt is paused - no idle processing done
var tNow := 0;		            ' Latest time for which there are values recorded
var tLast := -1;		        ' Last time we checked for a trigger 
'var xEye, yEye;		            ' Current eye position, now declared in UsreyDAQ
var tLastUpdate := -1;	        ' Last time view was updated
var vTrigger;		            ' Set by NextTime to indicate trigger transition
'var tLastTrigger := -1;	        ' Most recent known trigger time; new triggers have to be greater than this - Note that this is really only useful if ony ONE trigger line is being checked, otherwise need a separate value for each trigger line
var tTrigger := -1;	            ' Variable for newly discovered trigger times
var tFall;                      ' Need a variable to hold the fall time when detecting a pulse
var tAdvance;                   ' Time of advance
var tLastAdvance;               ' Time of last known advance
var tSaccadeStart;              ' Time we noticed a saccade started, only allow ~300 ms to find target, to prevent random looking
var saccadeMaxDur := 0.3;       ' Maximum time saccade is allowed to take, to prevent random looking, currently only enforced on saccade 2 for whatever reason
var tic;                        ' Bin size on the advance channel, used to prevent finding the same advance twice
var HBCycle% := 1;              ' Heartbeat cycle - used to put timing markers into eyetracker output files
'var isAbort%:=0;                'Keep track of if this trial was aborted, for state logic, unused
var laPage1Dur;                 'Set page durations trial-by-trial, for each relevant page
var laPage2Dur;
var laPage3Dur;
var laSaccadeReleaseDelay;      'Set Saccade release delay trial-by-trial
var optoOnState%;               'Set opto on state for this expt
var optoOffState%;              'Set opto off state for this expt
var TrialStartText$;            'Holds text to use in trial start sampletext
var SequencerPeriodMS;          'Collected but currently unused


'Idle loop state variables
const stateVSGWait%					:= 0;		' wait for vsg to send ready signal
const stateStartTrial%				:= 1;   
const stateWaitForFixPtOn%			:= 2;   
const stateWaitForAcquisition%	    := 3;   
const stateHoldFixation%			:= 4;   
const stateWaitForPage1Up%          := 5;
const stateWaitThroughPage1%        := 6;
const stateWaitForPage2Up%          := 7;
const stateWaitThroughPage2%        := 8;
const stateWaitForPage3Up%          := 9;
const stateWaitThroughPage3%        := 10;
const stateWaitForFinalBlankUp%     := 11;
const stateWaitForSaccadeRelease%   := 12;
const stateWaitSaccade1%            := 13;
const stateHoldSaccade1%            := 14;
const stateWaitSaccade2%            := 15;
const stateHoldSaccade2%            := 16;

const stateGiveMicrostim%           := 23;   'These states are just placeholders for now
const stateWaitSaccadeMicro%        := 24;

const stateSuccess%					:= 91;   'Just numbering these high for now
const stateFailure%					:= 92;
const stateAbort%			        := 93;
const stateAbortPenalty%	        := 94;
const stateAdvance%                 := 95;
const stateCheckAdvance%            := 96;
const stateITI%		 		        := 97;
const stateWaitForBlank%		    := 98;
const stateWaitForFixptOff%         := 99;
const stateWaitForAllOff%           := 100;


var iState%:=stateVSGWait%;		'present state
var tStateStart:=-1;	        'Time that present state started. Used to measure wait time, fixation time, etc. 
var nextState%;                 'For WaitForBlankTo(), allows waiting for blank then moving to next state 
var stateBegin% := 1;           'Keep track of whether it is the first time through a state, for logging purposes

'Sampling Variables
var laNWavemarks% := 0;
var laNContinuous% := 0;
var laWavemarkPorts%[63];
var laContinuousPorts%[64];


' Window handles and channel numbers
var XChannel%,YChannel%;		' Channel number assigned to eye x and y
var PupilChannel%;
var XChannelPurkinje%,YChannelPurkinje%;		' Channel number assigned to eye x and y, Purkinje
var PupilChannelPurkinje%;
'var XChannelDuplicate%, YChannelDuplicate%;   'Channel number assigned to duplicate eye x and y, used for velocity estimation
'var EyeVelocityChannel%;    '**Virtual** channel that will calculate eye velocity in deg/second
var FixPointChannel%;
var StimChannel%;
var AdvanceChannel%;
var ReadyChannel%;			' channel number for VSG ready pulse signal
var TimingChannel%;
var UtilityChannel%;
var PageToggleChannel%;
var OptoCopyChannel%;
var DataWindow%;	' time view
var XYWindow%;		' window with eye pos shown -- this is for eye pos and fixpt only
var iLoc1aChannel%;	' channel number for Loc1 in xy window (let's not bother showing a point, the response window is good enough
var iLoc1bChannel%;	' channel number for Loc1 in xy window
var iLoc2aChannel%;	' channel number for Loc2 in xy window
var iLoc2bChannel%;	' channel number for Loc2 in xy window
var iFixChannel%;	' channel number for fixpt in xy window
var iFixWindowChannel%;' channel number for fixpt window in xy window
var iMonitorChannel%;	' channel number for monitor position display in xy window
'var iEyePosChannel% := 1;   ' channel 1 is always used as eye position channel in xy windows
var StimHandle%;	' handle for stimulus application


' Display stuff
var FixWindowX[36],FixWindowY[36];	' points for displaying fixation window in xy view, for now we only have one window size, so we only need to make one window
var Loc1aWindowX[36],Loc1aWindowY[36];  'points for displaying the four possible response windows
var Loc1bWindowX[36],Loc1bWindowY[36];
var Loc2aWindowX[36],Loc2aWindowY[36];
var Loc2bWindowX[36],Loc2bWindowY[36];
var windowX[36], windowY[36];



''''''''''  Preliminaries ''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
LogInit(1);

UseTwo1401s% := DoWeUseTwo1401s%();
GetPortsAndNumWMsWFs%(laNWavemarks%,laNContinuous%,laWavemarkPorts%[],laContinuousPorts%[]);

' Assign channel numbers for eye X,Y and trigger. 
XChannel% := 21;
YChannel% := 22;
PupilChannel% := 23;
ReadyChannel% := 24;
FixPointChannel% := 25;
StimChannel% := 26;
AdvanceChannel% := 27;
UtilityChannel% := 28;
TimingChannel% := 29;
PageToggleChannel% := 33;

XChannelPurkinje% := 34;
YChannelPurkinje% := 35;
PupilChannelPurkinje% := 36;
OptoCopyChannel% := 37;

ExcludedChans%[0] := 21;  'XChannel is lowest non-electrode channel used by this function
ExcludedChans%[1] := 37;  'Pupil channel (Purkinje) is highest non-electrode channel used by this function

' Assign color values - not sure if we want to show any traces, could be a late add if desired
'laEyeTraceColors%[0] := 8;
'laEyeTraceColors%[1] := 16;
'laEyeTraceColors%[2] := 24;
'laEyeTraceColors%[3] := 32;
'laEyeTraceColors%[4] := 10;
'laEyeTraceColors%[5] := 12;
'laEyeTraceColors%[6] := 14;
'laEyeTraceColors%[7] := 20;
'laEyeTraceColors%[8] := 22;
'laEyeTraceColors%[9] := 26;
'laEyeTraceColors%[10] := 27;
'laEyeTraceColors%[11] := 39;



''''''''''  START Code Execution ''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

' Run dialog
if LookAwayScriptDialog%() = 0 then
    halt;  'Get out if dialog cancelled
endif

' Check if always looking flag is set. If so, issue a warning. 
if laAlwaysLooking% = 1 then
    if Query("Always looking is SET. Unset?") = 1 then
        laAlwaysLooking% := 0;
    endif
endif

if UseTwo1401s% = 0 then
    CreateSampleConfiguration();
    
    ' Get display windows ready
    InitializeWindows();
    
    tic := View(DataWindow%).BinSize(AdvanceChannel%);
    
    ' Prepare the toolbar buttons
    InitializeToolbar();
else
    InitializeToolbar();
endif;



''''''''''  END Code Execution ''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' LookAway script END
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''




'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' LookAway script FUNCTIONS
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

'''''CreateSampleConfiguration'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

proc CreateSampleConfiguration()
    var key$;
    var primaryTxt$;
    var secondaryTxt$;
    'var velo$;  'Used to define virtual eye velocity channel, this is currently not needed, implementation should be checked thoroughly
    
    key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Temp\\Filepref";
    SetPrimarySecondaryTxt(primaryTxt$,secondaryTxt$);
	SampleClear(); 'Set standard sampling state
    SampleChannels(64);  '32 does not work, we need more!
	SampleAutoComment(0); 'Do not prompt for comment after sampling
	SampleAutoCommit(60); 'Seconds between each file commit
    
	' Set path for new data files
	FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 3, 1);
	FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 1, 1);
	DoSampleAutoName(key$,"lookaway","la",primaryTxt$,secondaryTxt$);
	SampleAutoFile(1);  'Enable automatic file naming
    
    ' Text marks make extraction easier
    SampleTextMark(200);  '200 is max possible sampletext length
    
	'----Event Channel recording definitions----
    ' channel to look for ready signal from vsg
	SampleEvent(ReadyChannel%, 1, 2, 3600); 'Trigger channel, level
	SampleComment$(ReadyChannel%,"Ready");
	SampleTitle$(ReadyChannel%,"Ready");
    
	SampleEvent(FixPointChannel%, 2, 2, 3600);
	SampleComment$(FixPointChannel%, "FixPt");
	SampleTitle$(FixPointChannel%, "FixPt");
    
	SampleEvent(StimChannel%, 3, 2, 3600);
	SampleComment$(StimChannel%, "Stim");
	SampleTitle$(StimChannel%, "Stim");
    
	SampleEvent(AdvanceChannel%, 4, 2, 3600); 'Trigger channel, level
	SampleComment$(AdvanceChannel%, "Advance");
	SampleTitle$(AdvanceChannel%, "Advance");
    
    SampleEvent(PageToggleChannel%, 7, 2, 3600); 'Trigger channel, level; port moved from 6 to 7 10/9/26 to allow the toggle channel to be read on both rigs
	SampleComment$(PageToggleChannel%, "Toggle");
	SampleTitle$(PageToggleChannel%, "Toggle");
    
    
    'Digmark channel for eyetracker timing pulses
    if RecordEyeTrackerOutputFile% = 1 then
        SampleDigMark(20);  '20 Hz should be plenty high for an expected sustained rate
        SampleTitle$(32,"EyeFilePulse");  'Digital marker is by definition channel 32
    endif
    
       
    
    '----Analog, non-spiking electrode recording conditions
    'EYE CHANNELS. Last # is sampling freq in Hz. 
    if EyeXPort% > -1 then  'don't set up eye channels unless we are looking at eye position
        ' Set up eye X channel
        SampleWaveform(XChannel%,GetEyeXPort%(),1000);
        SampleTitle$(XChannel%,EyeXPortLabel$);
    endif;
    
    if EyeYPort% > -1 then  'don't set up eye channels unless we are looking at eye position
        ' Set up eye Y channel 
        SampleWaveform(YChannel%,GetEyeYPort%(),1000);
        SampleTitle$(YChannel%,EyeYPortLabel$);
    endif;
    
    if PupilPort% > -1 then
        SampleWaveform(PupilChannel%,PupilPort%,1000);       
        SampleTitle$(PupilChannel%,PupilPortLabel$);
    endif;
    
    if EyeXPortPurkinje% > -1 then  'don't set up eye channels unless we are looking at eye position
        ' Set up eye X channel
        SampleWaveform(XChannelPurkinje%,GetEyeXPortPurkinje%(),1000);
        SampleTitle$(XChannelPurkinje%,EyeXPortLabelPurkinje$);
    endif;
    
    if EyeYPortPurkinje% > -1 then  'don't set up eye channels unless we are looking at eye position
        ' Set up eye Y channel 
        SampleWaveform(YChannelPurkinje%,GetEyeYPortPurkinje%(),1000);
        SampleTitle$(YChannelPurkinje%,EyeYPortLabelPurkinje$);
    endif;
    
    if PupilPortPurkinje% > -1 then
        SampleWaveform(PupilChannelPurkinje%,PupilPortPurkinje%,1000);       
        SampleTitle$(PupilChannelPurkinje%,PupilPortLabelPurkinje$);
    endif;
    
    if laDoOpto% = 1 and OptoEffCopyPort% > -1 then
        SampleWaveform(OptoCopyChannel%,OptoEffCopyPort%,5000); 
        SampleTitle$(OptoCopyChannel%,OptoPortLabel$);
    endif;
    
    if UtilityPort% > -1 then
        SampleWaveform(UtilityChannel%,UtilityPort%,30000);         
        SampleTitle$(UtilityChannel%,UtilityPortLabel$);
    endif;
    
    if UseTwo1401s% = 1 then
        SampleDigMark(20);  '20 Hz should be plenty high for an expected sustained rate
        SampleTitle$(32,"Timing");  'Digital marker is by definition channel 32
        
        SampleEvent(TimingChannel%, 6, 2, 3600); 'Trigger channel, level
        SampleComment$(TimingChannel%,"Handshake");
        SampleTitle$(TimingChannel%,"Hndshk");
    endif
    
    
    '----Duplicate eye channels to create eye velocity channel----
    'With the new conception of this experiment tracking eye velocity
    'is no longer necessary (and was never actually ready) but this 
    'framework should work if we ever need to implement it
    
    '    'Create eye velocity channels
    '    docase
    '    case UseASLEyetracker% + UsePurkinjeEyetracker% = 0 then  'if no eye channels
    '        'Do nothing, no eye channels
    '    case UseASLEyetracker% > UsePurkinjeEyetracker% then  'if we are weighting ASL > Purkinje, use ASL
    '        XChannelDuplicate% := chanDuplicate(XChannel%);
    '        YChannelDuplicate% := chanDuplicate(YChannel%);
    '    else  'if we are weighting Purkinje >= ASL, use Purkinje
    '        XChannelDuplicate% := chanDuplicate(XChannelPurkinje%);
    '        YChannelDuplicate% := chanDuplicate(YChannelPurkinje%);
    '    endcase
    
    '    'Add slope and smoothing to channels (if they exist) to get velocity estimate
    '    if UseASLEyetracker% + UsePurkinjeEyetracker% > 0 then
    '        ChanProcessAdd(XChannelDuplicate%,3);  'Add slope to duplicate X channel, use default width of 3x sample interval
    '        ChanProcessAdd(YChannelDuplicate%,3);  'Add slope to duplicate Y channel, use default width of 3x sample interval
    '        ChanProcessAdd(XChannelDuplicate%,1);  'Add smoothing to duplicate X channel, use default width of 10x sample interval
    '        ChanProcessAdd(YChannelDuplicate%,1);  'Add smoothing to duplicate Y channel, use default width of 10x sample interval
    '    endif
    
    '    'Update duplicate channel title and units - if channel does not exist, nothing happens, NBD
    '    ChanTitle$(XChannelDuplicate%,"EyeXVelo");
    '    ChanTitle$(YChannelDuplicate%,"EyeYVelo");
    '    ChanUnits$(XChannelDuplicate%,"Volts/s");
    '    ChanUnits$(YChannelDuplicate%,"Volts/s");
    
    '    'Create and set up virtual channel for eye velocity
    '    'velo$ := "Sqrt(Sqr(Ch(21a))+Sqr(Ch(22a)))*2.5";  'There are four questions to resolve here:
    '    '                                                  1) What is the channel number of a duplicate channel?  It can't be "21a" as on screen, because this is an INT.
    '    '                                                  2) How to build string expression using the value in XChannelDuplicate%
    '    '                                                  3) How to build string expression with value of deg2volt variable
    '    '                                                  4) Can value in virtual channel be read by CHAN in the output sequencer?
    '    EyeVelocityChannel% := VirtualChan(0,velo$,XChannelDuplicate%);
    
    
    
    '    'Update ExcludedChans based on given channel numbers for duplicate channels
    '    'Note that at the point of coding it is entirely unclear what channel numbers
    '    'will be used here but it appears that they will be automatically assigned so
    '    'we kind of have to hope that something sensible is done channel-wise.  I kind 
    '    'of fear it's going to put them at the bottom (i.e. channels 1-X) and this will
    '    'screw up our excluded chans setup, putting the electrode channels way up past 
    '    '35 but there's not really a LOT to do right now about it.  If it's a problem
    '    'then I'll cross that bridge.
    '    if XChannelDuplicate% > 0 and XChannelDuplicate% < ExcludedChans%[0] then
    '        ExcludedChans%[0] := XChannelDuplicate%;
    '    endif
    '    if YChannelDuplicate% > 0 and YChannelDuplicate% < ExcludedChans%[0] then
    '        ExcludedChans%[0] := YChannelDuplicate%;
    '    endif
    '    if XChannelDuplicate% > ExcludedChans%[1] then
    '        ExcludedChans%[1] := XChannelDuplicate%;
    '    endif
    '    if YChannelDuplicate% > ExcludedChans%[1] then
    '        ExcludedChans%[1] := YChannelDuplicate%;
    '    endif
    '    'Deal with virtual channel as well???  No, virtual channel will not be treated as a regular channel. 
    
    
    '----Set up "spiking" Electrode Channels----
    SetUpElectrodeConfiguration(laNWavemarks%,ExcludedChans%[]);
    
    
	if UseTwo1401s% = 0 then
        SampleSequencer(script$ + "Tuning.pls");
    else
        SampleSequencer(script$ + "TuningSendTrigger.pls");
    endif;
    
	DoSampleOptimise();
	SampleMode(1); 'Continuous sampling
    
    
end;



'''''InitializeWindows'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

proc InitializeWindows()
    
	'Open the data sampling window
	DataWindow% := FileNew(0,4);
	Window(0, 50, 100, 100);
    XRange(0, 30);
	View(DataWindow%).WindowVisible(1);
    
	'Open an XY view to display the star-shape of the persistent eye trace
    'This particular display is probably not too useful for the LookAway task
    'so we will comment it out for now  TODO but think about it
    '	StarWindow% := FileNew(12);
    '	XRange(-15,15);
    '	YRange(-2,-15,15);  'set Y range for all visible channels
    '	XYDrawMode(0,5,0);  'do not autoscale
    '	WindowVisible(1);
    '	Window(50, 0, 100, 50);
    '	XYColour(1,16);
    
	' Channel 1 is eye pos. Set size of this channel's data to 0 - expands as needed. Join points, too. 
    '	XYSize(1, 0);
    '	XYJoin(1, 1);
    '	XYDrawMode(1, 2, 1);	' dot size is 1
    
    
	'Open an XY view to display eye position
	XYWindow% := FileNew(12);
    iEyePosChannel% := 1;  'The primary eye position channel is #1 - this is the eye position as determined based on whatever arbitrary combination of ASL and Purkinje data
	XRange(-15,15);
	YRange(-2,-15,15);  'set Y range for all visible channels
	XYDrawMode(0,5,0);  'do not autoscale
	WindowVisible(1);
	Window(0, 0, 50, 50);
	XYColour(iEyePosChannel%,16);  'Make this channel red
	XYSize(iEyePosChannel%,-1);  'Only one point on this channel
    
    
    'Create a new channel in the XY view to show the ASL eye position
    iEyePosASLChannel% := XYSetChan(0);
    XYColour(iEyePosASLChannel%,8);  'Make this channel dark green
	XYSize(iEyePosASLChannel%,-1);  'Only one point on this channel
    
    'Create a new channel in the XY view to show the Purkinje eye position
    iEyePosPurkinjeChannel% := XYSetChan(0);
    XYColour(iEyePosPurkinjeChannel%,32);  'Make this channel purplekinje
	XYSize(iEyePosPurkinjeChannel%,-1);  'Only one point on this channel;
    
    
	'Calcuate the fixation window
	var index%;
	var twopi;
	twopi := 2.0*4.0*ATan(1.0);
	
	for index% := 0 to 35 do
		FixWindowX[index%] := WindowRadius * Cos(index% * twopi/36.0);
		FixWindowY[index%] := WindowRadius * Sin(index% * twopi/36.0);
	next;
    
    'Draw response window for all possible response locations
    ArrConst(Loc1aWindowX[], FixWindowX[]);
	ArrAdd(Loc1aWindowX[], laLoc1aXDeg);  'Note that we initially assigned this value (&Y) in the dialog.  Start function will re-grab, but it will be the same.
	ArrConst(Loc1aWindowY[], FixWindowY[]);
	ArrAdd(Loc1aWindowY[], laLoc1aYDeg);
    
    ArrConst(Loc1bWindowX[], FixWindowX[]);
	ArrAdd(Loc1bWindowX[], laLoc1bXDeg);
	ArrConst(Loc1bWindowY[], FixWindowY[]);
	ArrAdd(Loc1bWindowY[], laLoc1bYDeg);
    
    ArrConst(Loc2aWindowX[], FixWindowX[]);
	ArrAdd(Loc2aWindowX[], laLoc2aXDeg);
	ArrConst(Loc2aWindowY[], FixWindowY[]);
	ArrAdd(Loc2aWindowY[], laLoc2aYDeg);
    
    ArrConst(Loc2bWindowX[], FixWindowX[]);
	ArrAdd(Loc2bWindowX[], laLoc2bXDeg);
	ArrConst(Loc2bWindowY[], FixWindowY[]);
	ArrAdd(Loc2bWindowY[], laLoc2bYDeg);
    
    
	'Create a new channel in the XY view to display the fixation window
	iFixWindowChannel% := XYSetChan(0);
	XYColour(iFixWindowChannel%, 13);  'Window is blue
	XYDrawMode(iFixWindowChannel%, 2, 1);
	XYJoin(iFixWindowChannel%, 1);
    
	'Create a new channel in the XY view to display the fixation point
	iFixChannel% := XYSetChan(0);
    XYColour(iFixChannel%, 13);  'Fixpt is blue
    
	'Create a new channel in the XY view to display the target window at location 1a
	iLoc1aChannel% := XYSetChan(0);
	XYColour(iLoc1aChannel%, 13);  'default as blue, will update to red (16) later if target
	XYDrawMode(iLoc1aChannel%, 2, 1);
	XYJoin(iLoc1aChannel%, 1);
    
    'Create a new channel in the XY view to display the target window at location 1b
	iLoc1bChannel% := XYSetChan(0);
	XYColour(iLoc1bChannel%, 13);  'default as blue, will update to red (16) later if target
	XYDrawMode(iLoc1bChannel%, 2, 1);
	XYJoin(iLoc1bChannel%, 1);
    
    'Create a new channel in the XY view to display the target window at location 2a
	iLoc2aChannel% := XYSetChan(0);
	XYColour(iLoc2aChannel%, 13);  'default as blue, will update to red (16) later if target
	XYDrawMode(iLoc2aChannel%, 2, 1);
	XYJoin(iLoc2aChannel%, 1);
    
    'Create a new channel in the XY view to display the target window at location 2b
	iLoc2bChannel% := XYSetChan(0);
	XYColour(iLoc2bChannel%, 13);  'default as blue, will update to red (16) later if target
	XYDrawMode(iLoc2bChannel%, 2, 1);
	XYJoin(iLoc2bChannel%, 1);
    
	'Create a new channel in the XY view to show the monitor's location
	iMonitorChannel% := XYSetChan(0);
	XYColour(iMonitorChannel%, 13);  'monitor location is blue
	XYDrawMode(iMonitorChannel%, 3, 1);
	XYJoin(iMonitorChannel%, 2);
	XYAddData(iMonitorChannel%, -9, -7);
	XYAddData(iMonitorChannel%, 9, -7);
	XYAddData(iMonitorChannel%, 9, 7);
	XYAddData(iMonitorChannel%, -9, 7);
    
end;


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' InitializeToolbar - prepare toolbar buttons. Note that the idle processing function (ToolbarSet(0, blah, blah)) is 
' not set here. That's done when the user hits the start button.
'
proc InitializeToolbar()
    
	View(App(8)).WindowVisible(0);	'Hide the standard sample bar
	ToolbarVisible(1);
    if UseTwo1401s% = 1 then
        ToolbarSet(1,"StartPlexon",StartPlexon%);
    else
        ToolbarSet(1,"Sample start",Start%);
    endif;
	ToolbarSet(2,"Sample stop", Stop%);
	ToolbarSet(3,"Juice", DefaultReward%);
	ToolbarSet(4,"Quit", Quit%);
	ToolbarEnable(2,0);
	Toolbar("Go", 0x3ff);
    
end;



''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Start%()
    
    
	var CommandLine$;
    var Opener$;
    var RemoteArg$;
    var ProgName$;
	var TargetArg$;
    var Verbose$;
    var TriggerPort$;
    var BGColor$;
    var Dist2Screen$;
    var FixationArg$;
    var MultSacc$;
    var MultSaccFilename$;
    var MultSaccHandle%;
    var fpx, fpy, fpd, fpr;     ' fixpt parameters
    var startSecs := 5;
    var pulseFound%;
    var tRise;
    var tFall;
    var gr$;  'to grab the grating parameters for parsing
    var ow, oh, iw, ih, sf, tf, phse, ctf;
    var con%;
    var cv$, pat$, ap$;
    var i%;  'For looping through JAWS/no-JAWS trials, also used as generic looping variable
    var j%;  'For looping through to-JF/away-JF trials
    var k%;  'For looping through one-saccade/two-saccade trials, or microstim/no-microstim trials
    var m%;  'For looping through S2-targ-a/S2-targ-b
    var m2%; 'Needed for counterbalance in single-saccade task
    var n%;  'For looping through nRepeats
    var s;
    var colonOrNot$;
    var F$, FC$;
    var FR%, FG%, FB%;
    'Variables to encode the possible gratings
    var g1a$;    'Grating 1a - the JAWS field grating
    var g1b$;    'Grating 1b - the non-JAWS field S1 grating
    var g2a$;    'Grating 2a - the first S2 grating
    var g2b$;    'Grating 2b - the second S2 grating 
    var g1af$;   'Faded version of grating 1a
    var g1bf$;   'Faded version of grating 1b
    var g1ao$;   'Orthogonal version of grating 1a
    var g1bo$;   'Orthogonal version of grating 1b
    var g1afo$;  'Faded, orthogonal version of grating 1a
    var g1bfo$;  'Faded, orthogonal version of grating 1b
    var g2af$;   'Faded version of grating 2a
    var g2bf$;   'Faded version of grating 2b
    var g2ao$;   'Orthogonal version of grating 2a 
    var g2bo$;   'Orthogonal version of grating 2b
    var g2afo$;  'Faded, orthogonal version of grating 2a
    var g2bfo$;  'Faded, orthogonal version of grating 2b
    var orthOri;
    var loc1ap%;                                  'Is this stimulus present?
    var loc1bp%;
    var loc2ap%;
    var loc2bp%;
    var loc1af%;                                  'Is this stimulus faded?
    var loc1bf%;
    var loc2af%;
    var loc2bf%;
    var loc1ao%;                                  'Is this stimulus orthogonal to the preferred orientation?
    var loc1bo%;
    var loc2ao%;
    var loc2bo%;
    var JAWS%[laMaxTrialPerDataPoint%*2];
    var nJ%;
    var JF%[laMaxTrialPerDataPoint%*2];
    var nJF%;
    var Sacc%[laMaxTrialPerDataPoint%*2];
    var nS%;
    var tempTarg%;  'temporary target indicator, used to allow easy randomization of S2 saccade location in two-S2 double saccade task without forcing a true counterbalance
    var numGratings%;
    
    'We do not currently use the fixpt parameter values
    'GetFixationPointParameterValues(fpx, fpy, fpd, fpr);  'In one case we will change the color of the fixation point
    
    'Set idle loop control variables based on experiment type
    StartSetExptVariables(laExperimentType%,laTrainingStageSSGNG%,laTrainingStageSSMicro%,laTrainingStageDS2S1%,laTrainingStageDS2S2%);
    
    'Create multi-saccade filename
    MultSaccFilename$ := GetScriptDir$(0)+"..\\..\\multi-sacc.txt";  'This is a text file which holds trial definitions for the multisaccade experiment
    Printlog("Writing Multi-Page command file to %s\n",MultSaccFilename$);

    'Get values for grating properties from the main stimulus
    gr$ := GetGratingParameters$("Stimulus");
    ParseGratingParameters%(gr$, laLoc1aXDeg, laLoc1aYDeg, ow, oh, iw, ih, con%, sf, tf, laGratingOri, phse, cv$, pat$, ap$, ctf);
    
    'Here is the panoply of variables we will be using to fill out and build the .txt file
    'nTrials% := CalcNumTrials%(laNRepeats%,laNRepeatsUseJAWS%,laNRepeatsNoJAWS%,laNRepeatsLoc1ToJF%,
    '            laNRepeatsLoc1AwayJF%,laNRepeatsLoc1Only%,laNRepeatsLoc1Loc2%,laExperimentType%,laTrainingStageSSGNG%,
    '            laTrainingStageSSMicro%,laTrainingStageDS2S1%,laTrainingStageDS2S2%);
    'var laTarget1Loc%[MAXTRIALS%];                'Trial-by-trial location of saccade target 1; can be 0 (no target, no-go), 1 (target is Loc1a), or 2 (target is Loc1b)
    'var laTarget2Loc%[MAXTRIALS%];                'Trial-by-trial location of saccade target 2; can be 0 (no saccade 2), 10 (target is Loc2a), or 11 (target is Loc2b)...jumping to 10/11 gives opportunity to draw more stimuli in the S1 period, just in case
    'var laLocsPresent%[MAXTRIALS%];               'Trial-by-trial indication of locations present, overall.  Is the sum of 1 (Loc1a present), 2 (Loc1b present), 4 (Loc2a present) and 8 (Loc2b present)
    'var laPage1Draw%[MAXTRIALS%];                 'Trial-by-trial indication of locations present on Page 1, for drawing in fixation display window, built in same way as laLocsPresent
    'var laPage2Draw%[MAXTRIALS%];                 'Same, for Page 2
    'var laPage3Draw%[MAXTRIALS%];                 'Same, for Page 3
    'var laPage1Fade%[MAXTRIALS%];                 'Trial-by-trial indication of locations present on Page 1, for drawing in fixation display window, built in same way as laLocsPresent
    'var laPage2Fade%[MAXTRIALS%];                 'Same, for Page 2
    'var laPage3Fade%[MAXTRIALS%];                 'Same, for Page 3
    'var laOptoThisTrial%[MAXTRIALS%];             'Trial-by-trial control of whether opto is used
    'var laMicroThisTrial%[MAXTRIALS%];            'Trial-by-trial control of whether microstim is used

    'Encode the grating spec for all possible stimuli, whether they might be used or not, easy enough to bang out.
    g1a$ := EncodeGratingParameters$(laLoc1aXDeg, laLoc1aYDeg, ow, oh, iw, ih, con%, sf, tf, laGratingOri, phse, cv$, pat$, ap$, ctf);
    g1b$ := EncodeGratingParameters$(laLoc1bXDeg, laLoc1bYDeg, ow, oh, iw, ih, con%, sf, tf, laGratingOri, phse, cv$, pat$, ap$, ctf);
    g2a$ := EncodeGratingParameters$(laLoc2aXDeg, laLoc2aYDeg, ow, oh, iw, ih, con%, sf, tf, laGratingOri, phse, cv$, pat$, ap$, ctf);
    g2b$ := EncodeGratingParameters$(laLoc2bXDeg, laLoc2bYDeg, ow, oh, iw, ih, con%, sf, tf, laGratingOri, phse, cv$, pat$, ap$, ctf);
    g1af$ := EncodeGratingParameters$(laLoc1aXDeg, laLoc1aYDeg, ow, oh, iw, ih, laContrastFade%, sf, tf, laGratingOri, phse, cv$, pat$, ap$, ctf);
    g1bf$ := EncodeGratingParameters$(laLoc1bXDeg, laLoc1bYDeg, ow, oh, iw, ih, laContrastFade%, sf, tf, laGratingOri, phse, cv$, pat$, ap$, ctf);
    g2af$ := EncodeGratingParameters$(laLoc2aXDeg, laLoc2aYDeg, ow, oh, iw, ih, laContrastFade%, sf, tf, laGratingOri, phse, cv$, pat$, ap$, ctf);
    g2bf$ := EncodeGratingParameters$(laLoc2bXDeg, laLoc2bYDeg, ow, oh, iw, ih, laContrastFade%, sf, tf, laGratingOri, phse, cv$, pat$, ap$, ctf);
    orthOri := laGratingOri + 90;
    if orthOri >= 360 then
        orthOri := orthOri - 360;  'honestly the VSG probably handles orientations > 360, but why risk it?
    endif;
    g1ao$ := EncodeGratingParameters$(laLoc1aXDeg, laLoc1aYDeg, ow, oh, iw, ih, con%, sf, tf, orthOri, phse, cv$, pat$, ap$, ctf);
    g1bo$ := EncodeGratingParameters$(laLoc1bXDeg, laLoc1bYDeg, ow, oh, iw, ih, con%, sf, tf, orthOri, phse, cv$, pat$, ap$, ctf);
    g1afo$ := EncodeGratingParameters$(laLoc1aXDeg, laLoc1aYDeg, ow, oh, iw, ih, laContrastFade%, sf, tf, orthOri, phse, cv$, pat$, ap$, ctf);
    g1bfo$ := EncodeGratingParameters$(laLoc1bXDeg, laLoc1bYDeg, ow, oh, iw, ih, laContrastFade%, sf, tf, orthOri, phse, cv$, pat$, ap$, ctf);
    if laExperimentType% = 0 then
        'Note that these are S2s but they are in the S1 locations for orthogonal/orthogonal-fade for the GNG experiment
        g2ao$ := EncodeGratingParameters$(laLoc1aXDeg, laLoc1aYDeg, ow, oh, iw, ih, con%, sf, tf, orthOri, phse, cv$, pat$, ap$, ctf);
        g2bo$ := EncodeGratingParameters$(laLoc1bXDeg, laLoc1bYDeg, ow, oh, iw, ih, con%, sf, tf, orthOri, phse, cv$, pat$, ap$, ctf);
        g2afo$ := EncodeGratingParameters$(laLoc1aXDeg, laLoc1aYDeg, ow, oh, iw, ih, laContrastFade%, sf, tf, orthOri, phse, cv$, pat$, ap$, ctf);
        g2bfo$ := EncodeGratingParameters$(laLoc1bXDeg, laLoc1bYDeg, ow, oh, iw, ih, laContrastFade%, sf, tf, orthOri, phse, cv$, pat$, ap$, ctf);
    else
        g2ao$ := EncodeGratingParameters$(laLoc2aXDeg, laLoc2aYDeg, ow, oh, iw, ih, con%, sf, tf, orthOri, phse, cv$, pat$, ap$, ctf);
        g2bo$ := EncodeGratingParameters$(laLoc2bXDeg, laLoc2bYDeg, ow, oh, iw, ih, con%, sf, tf, orthOri, phse, cv$, pat$, ap$, ctf);
        g2afo$ := EncodeGratingParameters$(laLoc2aXDeg, laLoc2aYDeg, ow, oh, iw, ih, laContrastFade%, sf, tf, orthOri, phse, cv$, pat$, ap$, ctf);
        g2bfo$ := EncodeGratingParameters$(laLoc2bXDeg, laLoc2bYDeg, ow, oh, iw, ih, laContrastFade%, sf, tf, orthOri, phse, cv$, pat$, ap$, ctf);
    endif
    
    'Build guide variables which will tell us how many instances of JAWS/no-Jaws, to-JF/away-JF, and 1-Sacc/2-Sacc (alternately micro/no-micro) to use
    nJ% := laNRepeatsUseJAWS% + laNRepeatsNoJAWS%;
    for i% := 0 to laNRepeatsUseJAWS%-1 do
        JAWS%[i%] := 1;  'JAWS%[] will be 1 if using opto, 0 if not
    next
    nJF% := laNRepeatsLoc1ToJF% + laNRepeatsLoc1AwayJF%;
    for i% := 0 to laNRepeatsLoc1AwayJF%-1 do
        JF%[i%] := 1;  'JF%[] will be 0 if primary location is JF (loc1a), 1 if not (loc1b) - this may seem backwards but makes things easier in the huge DOCASE below
    next
    nS% := laNRepeatsLoc1Only% + laNRepeatsLoc1Loc2%;
    for i% := 0 to laNRepeatsLoc1Only%-1 do
        Sacc%[i%] := 1;  'Sacc%[] will be 1 if one saccade only (or microstim), 0 if two saccade (or no microstim).  That's a bit weird but I think we can figure it out.
    next

    'Build out the values we need - it's only 970 lines of code, not even 1000!
    tc% := 0;
    docase
    case laExperimentType% = 0 then
        docase
        case laTrainingStageSSGNG% = 0 then
            for j% := 0 to nJF%-1 do
                for m% := 0 to 1 do  'S1 stimulus orientation, S2 is always opposite S1
                    for n% := 0 to laNRepeats%-1 do
                        laTarget1Loc%[tc%] := JF%[j%]+1;  'Target location is same as stimulus location, 1 or 2
                        laLocsPresent%[tc%] := JF%[j%]+1;  'Only location present is stimulus location, 1 or 2
                        laPage1Draw%[tc%] := JF%[j%]+1;  'Only location present on page 1 is stimulus location, 1 or 2
                        laPage2Draw%[tc%] := JF%[j%]+1;  'Only location present on page 2 is stimulus location, 1 or 2
                        if m% = 0 then  'say "0" = Ortho and "1" = Iso
                            laPage1Ortho%[tc%] := JF%[j%]+1;  'S1 is orthogonal (S2 will be iso)
                        else
                            laPage2Ortho%[tc%] := JF%[j%]+1;  'S2 is orthogonal (S1 will be iso)
                        endif
                        laPage1Fade%[tc%] := JF%[j%]+1;  'Fade on page one at target location
                        
                        if JF%[j%] = 0 then  'For Loc1a
                            if m% = 0 then  'S1 is ortho, S2 is not
                                laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                                laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                            else 'S2 is ortho, S1 is not
                                laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                                laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                            endif
                        else 'for Loc1b
                            if m% = 0 then  'S1 is ortho, S2 is not
                                laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                                laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                            else 'S2 is ortho, S1 is not
                                laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                                laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                            endif
                        endif
                        
                        tc% += 1;  'Increment index
                    next
                next
            next
        case laTrainingStageSSGNG% = 1 then
            for j% := 0 to nJF%-1 do  'S1/S2 location
                for m% := 0 to 1 do  'is S1 0rtho or 1so
                    for m2% := 0 to 1 do  'is S2 0rtho or 1so - if m2% = m% then we expect NO-GO
                        for n% := 0 to laNRepeats%-1 do
                            if m2% = m% then
                                laTarget1Loc%[tc%] := 0;  'The "target" loction did not change, this is a NO-GO trial
                            else
                                laTarget1Loc%[tc%] := JF%[j%]+1;  'Target location is same as stimulus location, 1 or 2
                            endif
                            laLocsPresent%[tc%] := JF%[j%]+1;  'Only location present is stimulus location, 1 or 2
                            laPage1Draw%[tc%] := JF%[j%]+1;  'Only location present on page 1 is stimulus location, 1 or 2
                            laPage2Draw%[tc%] := JF%[j%]+1;  'Only location present on page 2 is stimulus location, 1 or 2
                            laPage1Ortho%[tc%] := (JF%[j%]+1)*(1-m%);  'S1 location is orthogonal if m% is zero
                            laPage2Ortho%[tc%] := (JF%[j%]+1)*(1-m2%);  'S2 location is orthogonal if m2% is zero
                            
                            if JF%[j%] = 0 then
                                if m% = 0 then
                                    if m2% = 0 then
                                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                                        laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                                    else
                                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                                        laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                                    endif
                                else
                                    if m2% = 0 then
                                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                                        laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                                    else
                                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                                        laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                                    endif
                                endif
                            else
                                if m% = 0 then
                                    if m2% = 0 then
                                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                                        laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                                    else
                                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                                        laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                                    endif
                                else
                                    if m2% = 0 then
                                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                                        laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                                    else
                                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                                        laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                                    endif
                                endif
                            endif
                            
                            tc% += 1;  'Increment index
                        next
                    next
                next
            next
        case laTrainingStageSSGNG% = 2 then
            for j% := 0 to nJF%-1 do  'S1/S2 location
                for m% := 0 to 1 do  'is S1 0rtho or 1so
                    for m2% := 0 to 1 do  'is S2 0rtho or 1so - if m2% = m% then we expect NO-GO
                        for n% := 0 to laNRepeats%-1 do
                            'This is identical to stage=1 except the S2 has moved to Page 3, Page 2 is a gap
                            if m2% = m% then
                                laTarget1Loc%[tc%] := 0;  'The "target" loction did not change, this is a NO-GO trial
                            else
                                laTarget1Loc%[tc%] := JF%[j%]+1;  'Target location is same as stimulus location, 1 or 2
                            endif
                            laLocsPresent%[tc%] := JF%[j%]+1;  'Only location present is stimulus location, 1 or 2
                            laPage1Draw%[tc%] := JF%[j%]+1;  'Only location present on page 1 is stimulus location, 1 or 2
                            laPage3Draw%[tc%] := JF%[j%]+1;  'Only location present on page 2 is stimulus location, 1 or 2
                            laPage1Ortho%[tc%] := (JF%[j%]+1)*(1-m%);  'S1 location is orthogonal if m% is zero
                            laPage3Ortho%[tc%] := (JF%[j%]+1)*(1-m2%);  'S2 location is orthogonal if m2% is zero
                            
                            if JF%[j%] = 0 then
                                if m% = 0 then
                                    if m2% = 0 then
                                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                                        laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                                    else
                                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                                        laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                                    endif
                                else
                                    if m2% = 0 then
                                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                                        laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                                    else
                                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                                        laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                                    endif
                                endif
                            else
                                if m% = 0 then
                                    if m2% = 0 then
                                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                                        laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                                    else
                                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                                        laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                                    endif
                                else
                                    if m2% = 0 then
                                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                                        laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                                    else
                                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                                        laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                                    endif
                                endif
                            endif
                            
                            tc% += 1;  'Increment index
                        next
                    next
                next
            next
        case laTrainingStageSSGNG% = 3 then
            for i% := 0 to nJ%-1 do
                for j% := 0 to nJF%-1 do  'Target location
                    for m% := 0 to 1 do  'is S1 location 0rtho or 1so
                        for m2% := 0 to 1 do  'is S2 in S1 location 0rtho or 1so - if m2% = m% then we expect NO-GO
                            for n% := 0 to laNRepeats%-1 do
                                'This is identical to stage=2 except we fade in the distractor stimulus on Page 3 and add opto
                                if m2% = m% then
                                    laTarget1Loc%[tc%] := 0;  'The "target" loction did not change, this is a NO-GO trial
                                else
                                    laTarget1Loc%[tc%] := JF%[j%]+1;  'Target location is same as stimulus location, 1 or 2
                                endif
                                laLocsPresent%[tc%] := 1+2;  'Both S1 locations present
                                laPage1Draw%[tc%] := JF%[j%]+1;  'Only location present on page 1 is stimulus location, 1 or 2
                                laPage3Draw%[tc%] := 1+2;  'Both S2 locations present on page 3
                                laPage1Ortho%[tc%] := (JF%[j%]+1)*(1-m%);  'S1 location is orthogonal if m% is zero
                                'When there are two locations for S2, exactly one must be orthogonal, either 1 or 2
                                if m2% = 0 then
                                    laPage3Ortho%[tc%] := JF%[j%]+1;  'same-loc is orthogonal
                                else
                                    laPage3Ortho%[tc%] := 2-JF%[j%];  'same-loc is iso, then opposite-loc is orthogonal
                                endif
                                laPage3Fade%[tc%] := 2-JF%[j%];  'Fade on page three is opposite of the draw location on page 1
                                laOptoThisTrial%[tc%] := JAWS%[i%];  'JAWS yes/no 1/0
                                
                                if JF%[j%] = 0 then
                                    if m% = 0 then
                                        if m2% = 0 then
                                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Fade; ";
                                        else
                                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho, Fade; ";
                                        endif
                                    else
                                        if m2% = 0 then
                                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Fade; ";
                                        else
                                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho, Fade; ";
                                        endif
                                    endif
                                else
                                    if m% = 0 then
                                        if m2% = 0 then
                                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Fade; ";
                                        else
                                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho, Fade; ";
                                        endif
                                    else
                                        if m2% = 0 then
                                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Fade; ";
                                        else
                                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho, Fade; ";
                                        endif
                                    endif
                                endif
                                
                                tc% += 1;  'Increment index
                            next
                        next
                    next
                next
            next
        case laTrainingStageSSGNG% = 4 then
            for i% := 0 to nJ%-1 do
                for j% := 0 to nJF%-1 do
                    for m% := 0 to 1 do  'is S1 location 0rtho or 1so
                        for m2% := 0 to 1 do  'is S2 in S1 location 0rtho or 1so - if m2% = m% then we expect NO-GO
                            for n% := 0 to laNRepeats%-1 do
                                'This is identical to stage=3 except the distractor stimulus on Page 3 is not faded
                                if m2% = m% then
                                    laTarget1Loc%[tc%] := 0;  'The "target" loction did not change, this is a NO-GO trial
                                else
                                    laTarget1Loc%[tc%] := JF%[j%]+1;  'Target location is same as stimulus location, 1 or 2
                                endif
                                laLocsPresent%[tc%] := 1+2;  'Both S1 locations present
                                laPage1Draw%[tc%] := JF%[j%]+1;  'Only location present on page 1 is stimulus location, 1 or 2
                                laPage3Draw%[tc%] := 1+2;  'Both S1 locations present on page 3
                                laPage1Ortho%[tc%] := (JF%[j%]+1)*(1-m%);  'S1 location is orthogonal if m% is zero
                                'When there are two locations for S2, exactly one must be orthogonal, either 1 or 2
                                if m2% = 0 then
                                    laPage3Ortho%[tc%] := JF%[j%]+1;  'same-loc is orthogonal
                                else
                                    laPage3Ortho%[tc%] := 2-JF%[j%];  'same-loc is iso, then opposite-loc is orthogonal
                                endif
                                laOptoThisTrial%[tc%] := JAWS%[i%];  'JAWS yes/no 1/0
                                
                                if JF%[j%] = 0 then
                                    if m% = 0 then
                                        if m2% = 0 then
                                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                                        else
                                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                                        endif
                                    else
                                        if m2% = 0 then
                                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                                        else
                                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                                        endif
                                    endif
                                else
                                    if m% = 0 then
                                        if m2% = 0 then
                                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                                        else
                                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                                        endif
                                    else
                                        if m2% = 0 then
                                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                                        else
                                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                                        endif
                                    endif
                                endif
                                
                                tc% += 1;  'Increment index
                            next
                        next
                    next
                next
            next       
        endcase
    case laExperimentType% = 1 then
        docase
        case laTrainingStageSSMicro% = 0 then
            for j% := 0 to nJF%-1 do
                for n% := 0 to laNRepeats%-1 do
                    laTarget1Loc%[tc%] := (JF%[j%]+1)*2;  'Target location is same as stimulus location, 2 or 4 in microstim!
                    laLocsPresent%[tc%] := (JF%[j%]+1)*2;  'Only location present is stimulus location, 2 or 4 in microstim!
                    laPage1Draw%[tc%] := (JF%[j%]+1)*2;  'Only location present on page 1 is stimulus location, 2 or 4 in microstim!
                    
                    if JF%[j%] = 0 then
                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                    else
                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + "; ";
                    endif
                    
                    tc% += 1;  'Increment index
                next
            next
        case laTrainingStageSSMicro% = 1 then
            for j% := 0 to nJF%-1 do
                for k% := 0 to nS%-1 do
                    for n% := 0 to laNRepeats%-1 do
                        laTarget1Loc%[tc%] := (JF%[j%]+1)*2;  'Target location is same as stimulus location, 2 or 4 in microstim!
                        laLocsPresent%[tc%] := (JF%[j%]+1)*2;  'Only location present is stimulus location, 2 or 4 in microstim!
                        laPage1Draw%[tc%] := (JF%[j%]+1)*2;  'Only location present on page 1 is stimulus location, 2 or 4 in microstim!
                        laPage2Draw%[tc%] := (JF%[j%]+1)*2;  'Only location present on page 1 is stimulus location, 2 or 4 in microstim, same as page 1
                        laMicroThisTrial%[tc%] := Sacc%[k%];  'Microstim yes/no 1/0
                        
                        if JF%[j%] = 0 then
                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; Microstim = " + Str$(Sacc%[k%]) + "; ";
                        else
                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + "; Microstim = " + Str$(Sacc%[k%]) + "; ";
                        endif
                        
                        tc% += 1;  'Increment index
                    next
                next
            next
        case laTrainingStageSSMicro% = 2 then
            for i% := 0 to nJ%-1 do
                for j% := 0 to nJF%-1 do
                    for k% := 0 to nS%-1 do
                        for n% := 0 to laNRepeats%-1 do
                            laTarget1Loc%[tc%] := (JF%[j%]+1)*2;  'Target location is same as stimulus location, 2 or 4 in microstim!
                            laLocsPresent%[tc%] := (JF%[j%]+1)*2;  'Only location present is stimulus location, 2 or 4 in microstim!
                            laPage1Draw%[tc%] := (JF%[j%]+1)*2;  'Only location present on page 1 is stimulus location, 2 or 4 in microstim!
                            laPage2Draw%[tc%] := (JF%[j%]+1)*2;  'Only location present on page 1 is stimulus location, 2 or 4 in microstim, same as page 1
                            laPage2Fade%[tc%] := (JF%[j%]+1)*2;  'Always fade current location (only location on page, etc.)
                            laMicroThisTrial%[tc%] := Sacc%[k%];  'Microstim yes/no 1/0
                            laOptoThisTrial%[tc%] := JAWS%[i%];  'JAWS yes/no 1/0
                            
                            if JF%[j%] = 0 then
                                laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Fade out; ";
                            else
                                laInitialST$[tc%] := "S1 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Fade out; ";
                            endif
                            'The Microstim/JAWS status is independent of whether the stimulus is in the JAWS field
                            laInitialST$[tc%] += "Microstim = " + Str$(Sacc%[k%]) + "; JAWS = " + Str$(JAWS%[i%]) + "; ";
                            
                            tc% += 1;  'Increment index
                        next
                    next
                next
            next
        case laTrainingStageSSMicro% = 3 then
            for i% := 0 to nJ%-1 do
                for j% := 0 to nJF%-1 do
                    for k% := 0 to nS%-1 do
                        for n% := 0 to laNRepeats%-1 do
                            laTarget1Loc%[tc%] := (JF%[j%]+1)*2;  'Target location is same as stimulus location, 2 or 4 in microstim!
                            laLocsPresent%[tc%] := (JF%[j%]+1)*2;  'Only location present is stimulus location, 2 or 4 in microstim!
                            laPage1Draw%[tc%] := (JF%[j%]+1)*2;  'Only location present on page 1 is stimulus location, 2 or 4 in microstim!
                            laMicroThisTrial%[tc%] := Sacc%[k%];  'Microstim yes/no 1/0
                            laOptoThisTrial%[tc%] := JAWS%[i%];  'JAWS yes/no 1/0
                            
                            if JF%[j%] = 0 then
                                laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Saccade to blank; ";
                            else
                                laInitialST$[tc%] := "S1 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Saccade to blank; ";
                            endif
                            'The Microstim/JAWS status is independent of whether the stimulus is in the JAWS field
                            laInitialST$[tc%] += "Microstim = " + Str$(Sacc%[k%]) + "; JAWS = " + Str$(JAWS%[i%]) + "; ";
                            
                            tc% += 1;  'Increment index
                        next
                    next
                next
            next
        endcase
    case laExperimentType% = 2 then
        docase
        case laTrainingStageDS2S1% = 0 then
            for j% := 0 to nJF%-1 do
                for n% := 0 to laNRepeats%-1 do
                    laTarget1Loc%[tc%] := JF%[j%]+1;  'Target location is same as stimulus location, 1 or 2
                    laLocsPresent%[tc%] := JF%[j%]+1;  'Only location present is stimulus location, 1 or 2
                    laPage1Draw%[tc%] := JF%[j%]+1;  'Only location present on page 1 is stimulus location, 1 or 2

                    if JF%[j%] = 0 then
                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                    else
                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                    endif
                    
                    tc% += 1;  'Increment index
                next
            next
        case laTrainingStageDS2S1% = 1 then
            for j% := 0 to nJF%-1 do
                for k% := 0 to nS%-1 do
                    for n% := 0 to laNRepeats%-1 do
                        laTarget1Loc%[tc%] := JF%[j%]+1;  'Target location is same as stimulus location, 1 or 2
                        laPage1Draw%[tc%] := JF%[j%]+1;  'Only location present on page 1 is stimulus location, 1 or 2
                        if k% = 1 then  'k%=1 is one-saccade only
                            laLocsPresent%[tc%] := JF%[j%]+1;  'Only location present is S1 location, 1 or 2
                            laPage2Draw%[tc%] := 0;  'Nothing to draw on page 2
                            laPage3Draw%[tc%] := 0;  'Nothing to draw on page 3
                            laTarget2Loc%[tc%] := 0;  'No second target
                        else  'k%=0 is two-saccade
                            laLocsPresent%[tc%] := JF%[j%]+1+4;  'The stimulus location is present (1 or 2 = JF%[j%]+1) and loc2a is present (4)
                            laPage2Draw%[tc%] := JF%[j%]+1+4;  'same as locs present
                            laPage3Draw%[tc%] := 4;  'Page 3 is only the S2 in loc2a
                            laTarget2Loc%[tc%] := 4;  'Loc2a is always target
                        endif
                                                
                        if JF%[j%] = 0 then
                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                        else
                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                        endif
                        'The S2 location is the same regardless of whether the S1 is in the JAWS field or not
                        if k% = 0 then  
                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + "; ";
                        endif
                        
                        tc% += 1;  'Increment index
                    next
                next
            next
        case laTrainingStageDS2S1% = 2 then
            for j% := 0 to nJF%-1 do
                for n% := 0 to laNRepeats%-1 do
                    laTarget1Loc%[tc%] := JF%[j%]+1;  'Target location is same as stimulus location, 1 or 2
                    laTarget2Loc%[tc%] := 4;  'Target 2 is always loc2a
                    laLocsPresent%[tc%] := 1+2+4;  'Both S1s present on every trial
                    laPage1Draw%[tc%] := 1+2;  'Both S1s present on page 1
                    laPage1Fade%[tc%] := 2-JF%[j%];  'If target is position 1, fade stimulus 2; if in position 2 fade stimulus 1
                    laPage1Ortho%[tc%] := 2-JF%[j%];  'Fade-in location is orthogonal
                    laPage2Draw%[tc%] := 1+2+4;  'Both S1s present and S2 at loc2a on page 2
                    laPage2Fade%[tc%] := 2-JF%[j%];  'If target is position 1, fade stimulus 2; if in position 2 fade stimulus 1
                    laPage2Ortho%[tc%] := 2-JF%[j%];  'Fade-in location is orthogonal
                    laPage3Draw%[tc%] := 4;  'Loc2a present on page 3
                    
                    
                    if JF%[j%] = 0 then
                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Target; ";
                        laInitialST$[tc%] += "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Fade in, Dist, Ortho; ";
                    else
                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Target; ";
                        laInitialST$[tc%] += "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Fade in, Dist, Ortho; ";
                    endif
                    'The S2 location is the same regardless of whether the S1 is in the JAWS field or not
                    laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + "; ";
                    
                    tc% += 1;  'Increment index
                next
            next
        case laTrainingStageDS2S1% = 3 then
            for j% := 0 to nJF%-1 do
                for m% := 0 to 1 do 'this is orientation of S1-targ
                    for n% := 0 to laNRepeats%-1 do
                        laTarget1Loc%[tc%] := JF%[j%]+1;  'Target location is same as stimulus location, 1 or 2
                        laTarget2Loc%[tc%] := 4;  'Target 2 is always loc2a
                        laLocsPresent%[tc%] := 1+2+4;  'Both S1s, one S2 present on every trial
                        laPage1Draw%[tc%] := 1+2+4;  'All three stimuli are on page 1
                        if m% = 0 then  'say "0" = Ortho and "1" = Iso
                            laPage1Ortho%[tc%] := JF%[j%]+1+4;  'Target S1 location is orthogonal, so target is also orthogonal
                        else
                            laPage1Ortho%[tc%] := 2-JF%[j%];  'Nontarget S1 location is orthogonal
                        endif
                        
                        if JF%[j%] = 0 then
                            if m% = 0 then  'target is ortho (we could get more clever about constructing this, but just doing this will be easier and faster
                                laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Target, Ortho; ";
                                laInitialST$[tc%] += "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Dist; ";
                            else
                                laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Target; ";
                                laInitialST$[tc%] += "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Dist, Ortho; ";
                            endif
                        else
                            if m% = 0 then
                                laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Target, Ortho; ";
                                laInitialST$[tc%] += "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Dist; ";
                            else
                                laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Target; ";
                                laInitialST$[tc%] += "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Dist, Ortho; ";
                            endif
                        endif
                        'The S2 location is the same regardless of whether the S1 is in the JAWS field or not, but may or may not be orthogonal to JFPref
                        if m% = 0 then
                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Ortho; ";
                        else
                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + "; ";
                        endif
                        
                        tc% += 1;  'Increment index
                    next
                next
            next
        case laTrainingStageDS2S1% = 4 then
            for j% := 0 to nJF%-1 do
                for m% := 0 to 1 do 'this is orientation of S1-targ
                    for n% := 0 to laNRepeats%-1 do
                        laTarget1Loc%[tc%] := JF%[j%]+1;  'Target location is same as stimulus location, 1 or 2
                        laTarget2Loc%[tc%] := 4;  'Target 2 is always loc2a
                        laLocsPresent%[tc%] := 1+2+4;  'Both S1s, one S2 present on every trial
                        laPage1Draw%[tc%] := 4;  'This step begins the stages where we present loc2a first
                        laPage2Draw%[tc%] := 1+2+4;  'Both S1s, one S2 present on page 2
                        if m% = 0 then  'If S1-target is Ortho
                            laPage1Ortho%[tc%] := 4;  'The S2-target must be ortho
                            laPage2Ortho%[tc%] := JF%[j%]+1+4;  'On page 2 both S1-target and S2-target must be ortho
                        else
                            laPage2Ortho%[tc%] := 2-JF%[j%];  'S1-Nontarget (only present on page 2) is ortho
                        endif
                        
                        'The S2 location is the same regardless of whether the S1 is in the JAWS field or not (put it first, it's up first)
                        if m% = 0 then
                            laInitialST$[tc%] := "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Ortho; ";
                        else
                            laInitialST$[tc%] := "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + "; ";
                        endif
                        if JF%[j%] = 0 then
                            if m% = 0 then  'target is ortho (we could get more clever about constructing this, but just doing this will be easier and faster
                                laInitialST$[tc%] += "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Target, Ortho; ";
                                laInitialST$[tc%] += "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Dist; ";
                            else
                                laInitialST$[tc%] += "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Target; ";
                                laInitialST$[tc%] += "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Dist, Ortho; ";
                            endif
                        else
                            if m% = 0 then
                                laInitialST$[tc%] += "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Target, Ortho; ";
                                laInitialST$[tc%] += "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Dist; ";
                            else
                                laInitialST$[tc%] += "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Target; ";
                                laInitialST$[tc%] += "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Dist, Ortho; ";
                            endif
                        endif
                        
                        tc% += 1;  'Increment index
                    next
                next
            next
        case laTrainingStageDS2S1% = 5 then
            for i% := 0 to nJ%-1 do
                for j% := 0 to nJF%-1 do
                    for m% := 0 to 1 do 'this is orientation of S1-targ
                        for n% := 0 to laNRepeats%-1 do
                            laTarget1Loc%[tc%] := JF%[j%]+1;  'Target location is same as stimulus location, 1 or 2
                            laTarget2Loc%[tc%] := 4;  'Target 2 is always loc2a
                            laLocsPresent%[tc%] := 1+2+4;  'Both S1s, one S2 present on every trial
                            laPage1Draw%[tc%] := 4;  'Page 1, present loc2a first
                            laPage2Draw%[tc%] := 1+2+4;  'Show all stimuli on page 2
                            laPage3Draw%[tc%] := 1+2+4;  'Show all stimuli on page 3
                            laPage3Fade%[tc%] := 1+2+4;  'Fading all stimuli
                            if m% = 0 then  'If S1-target is Ortho
                                laPage1Ortho%[tc%] := 4;  'The S2-target must be ortho
                                laPage2Ortho%[tc%] := JF%[j%]+1+4;  'On page 2 both S1-target and S2-target must be ortho
                                laPage3Ortho%[tc%] := JF%[j%]+1+4;  'On page 3 both S1-target and S2-target must be ortho
                            else
                                laPage2Ortho%[tc%] := 2-JF%[j%];  'S1-Nontarget (only present on page 2/3) is ortho
                                laPage3Ortho%[tc%] := 2-JF%[j%];  'S1-Nontarget (only present on page 2/3) is ortho
                            endif
                            laOptoThisTrial%[tc%] := JAWS%[i%];  'JAWS yes/no 1/0
                            
                            'The S2 location is the same regardless of whether the S1 is in the JAWS field or not (put it first, it's up first)
                            if m% = 0 then
                                laInitialST$[tc%] := "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Ortho, Fade out; ";
                            else
                                laInitialST$[tc%] := "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Fade out; ";
                            endif
                            if JF%[j%] = 0 then
                                if m% = 0 then  'target is ortho (we could get more clever about constructing this, but just doing this will be easier and faster
                                    laInitialST$[tc%] += "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Target, Ortho, Fade out; ";
                                    laInitialST$[tc%] += "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Dist, Fade out; ";
                                else
                                    laInitialST$[tc%] += "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Target, Fade out; ";
                                    laInitialST$[tc%] += "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Dist, Ortho, Fade out; ";
                                endif
                            else
                                if m% = 0 then
                                    laInitialST$[tc%] += "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Target, Ortho, Fade out; ";
                                    laInitialST$[tc%] += "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Dist, Fade out; ";
                                else
                                    laInitialST$[tc%] += "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Target, Fade out; ";
                                    laInitialST$[tc%] += "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Dist, Ortho, Fade out; ";
                                endif
                            endif
                            'The JAWS status is independent of whether the stimulus is in the JAWS field
                            laInitialST$[tc%] += "JAWS = " + Str$(JAWS%[i%]) + "; ";
                            
                            tc% += 1;  'Increment index
                        next
                    next
                next
            next
        case laTrainingStageDS2S1% = 6 then
            for i% := 0 to nJ%-1 do
                for j% := 0 to nJF%-1 do
                    for m% := 0 to 1 do 'this is orientation of S1-targ
                        for n% := 0 to laNRepeats%-1 do
                            laTarget1Loc%[tc%] := JF%[j%]+1;  'Target location is same as stimulus location, 1 or 2
                            laTarget2Loc%[tc%] := 4;  'Target 2 is always loc2a
                            laLocsPresent%[tc%] := 1+2+4;  'Both S1s, one S2 present on every trial
                            laPage1Draw%[tc%] := 4;  'This step begins the stages where we present loc2a first
                            laPage2Draw%[tc%] := 1+2+4;  'Both S1s, one S2 present on page 2
                            if m% = 0 then  'If S1-target is Ortho
                                laPage1Ortho%[tc%] := 4;  'The S2-target must be ortho
                                laPage2Ortho%[tc%] := JF%[j%]+1+4;  'On page 2 both S1-target and S2-target must be ortho
                            else
                                laPage2Ortho%[tc%] := 2-JF%[j%];  'S1-Nontarget (only present on page 2) is ortho
                            endif
                            laOptoThisTrial%[tc%] := JAWS%[i%];  'JAWS yes/no 1/0
                            
                            'The S2 location is the same regardless of whether the S1 is in the JAWS field or not (put it first, it's up first)
                            if m% = 0 then
                                laInitialST$[tc%] := "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Ortho; ";
                            else
                                laInitialST$[tc%] := "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + "; ";
                            endif
                            if JF%[j%] = 0 then
                                if m% = 0 then  'target is ortho (we could get more clever about constructing this, but just doing this will be easier and faster
                                    laInitialST$[tc%] += "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Target, Ortho; ";
                                    laInitialST$[tc%] += "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Dist; ";
                                else
                                    laInitialST$[tc%] += "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Target; ";
                                    laInitialST$[tc%] += "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Dist, Ortho; ";
                                endif
                            else
                                if m% = 0 then
                                    laInitialST$[tc%] += "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Target, Ortho; ";
                                    laInitialST$[tc%] += "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Dist; ";
                                else
                                    laInitialST$[tc%] += "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Target; ";
                                    laInitialST$[tc%] += "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Dist, Ortho; ";
                                endif
                            endif
                            'The JAWS status is independent of whether the stimulus is in the JAWS field
                            laInitialST$[tc%] += "JAWS = " + Str$(JAWS%[i%]) + "; ";

                            tc% += 1;  'Increment index
                        next
                    next
                next
            next
        endcase
    case laExperimentType% = 3 then
        docase
        case laTrainingStageDS2S2% = 0 then
            for j% := 0 to nJF%-1 do
                for n% := 0 to laNRepeats%-1 do
                    laTarget1Loc%[tc%] := JF%[j%]+1;  'Target location is same as stimulus location, 1 or 2
                    laLocsPresent%[tc%] := JF%[j%]+1;  'Only location present is stimulus location, 1 or 2
                    laPage1Draw%[tc%] := JF%[j%]+1;  'Only location present on page 1 is stimulus location, 1 or 2
                    
                    if JF%[j%] = 0 then
                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                    else
                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                    endif
                    
                    tc% += 1;  'Increment index
                next
            next
        case laTrainingStageDS2S2% = 1 then
            for j% := 0 to nJF%-1 do
                for k% := 0 to nS%-1 do
                    for n% := 0 to laNRepeats%-1 do
                        laTarget1Loc%[tc%] := JF%[j%]+1;  'Target location is same as stimulus location, 1 or 2
                        laPage1Draw%[tc%] := JF%[j%]+1;  'Only location present on page 1 is stimulus location, 1 or 2
                        if k% = 1 then  'k%=1 is one-saccade only
                            laLocsPresent%[tc%] := JF%[j%]+1;  'Only location present is S1 location, 1 or 2
                            laPage2Draw%[tc%] := 0;  'Nothing to draw on page 2
                            laPage3Draw%[tc%] := 0;  'Nothing to draw on page 3
                            laTarget2Loc%[tc%] := 0;  'No second target
                        else  'k%=0 is two-saccade
                            laLocsPresent%[tc%] := JF%[j%]+1+4;  'The stimulus location is present (1 or 2 = JF%[j%]+1) and loc2a is present (4)
                            laPage2Draw%[tc%] := JF%[j%]+1+4;  'same as locs present
                            laPage3Draw%[tc%] := 4;  'Page 3 is only the S2 in loc2a
                            laTarget2Loc%[tc%] := 4;  'Loc2a is always target
                        endif
                                                
                        if JF%[j%] = 0 then
                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                        else
                            laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                        endif
                        'The S2 location is the same regardless of whether the S1 is in the JAWS field or not
                        if k% = 0 then  
                            laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + "; ";
                        endif
                        
                        tc% += 1;  'Increment index
                    next
                next
            next
        case laTrainingStageDS2S2% = 2 then
            for j% := 0 to nJF%-1 do
                for n% := 0 to laNRepeats%-1 do
                    laTarget1Loc%[tc%] := JF%[j%]+1;  'Target location is same as stimulus location, 1 or 2
                    laTarget2Loc%[tc%] := 4;  'Loc2a is always target while loc2b is being faded in
                    laLocsPresent%[tc%] := JF%[j%]+1+4+8;  'Target location, plus both S2s present
                    laPage1Draw%[tc%] := JF%[j%]+1;  'Only location present on page 1 is stimulus location, 1 or 2
                    laPage2Draw%[tc%] := JF%[j%]+1+4+8;  'Target location, plus both S2s present on page 2
                    laPage3Draw%[tc%] := 4+8;  'Dropping S1 (after saccade to S1)
                    laPage2Fade%[tc%] := 8;  'Fading in Loc2b
                    laPage3Fade%[tc%] := 8;  'Fading in Loc2b
                    laPage2Ortho%[tc%] := 8;  'Loc2b is orthogonal while fading in
                    laPage3Ortho%[tc%] := 8;  'Loc2b is orthogonal while fading in
                    
                    if JF%[j%] = 0 then
                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                    else
                        laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                    endif
                    'The S2 locations are the same regardless of whether the S1 is in the JAWS field or not
                    laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Target; ";
                    laInitialST$[tc%] += "S2 x = " + Str$(laLoc2bXDeg) + ", y = " + Str$(laLoc2bYDeg) + ", Dist, Fade in; ";
                    
                    tc% += 1;  'Increment index
                next
            next
        case laTrainingStageDS2S2% = 3 then
            for j% := 0 to nJF%-1 do
                for m% := 0 to 1 do 'this is orientation of S1-cue
                    for n% := 0 to laNRepeats%-1 do
                        tempTarg% := 4 + (4*round(rand()));  'place S2-target in position 4 or 8 randomly
                        laTarget1Loc%[tc%] := JF%[j%]+1;  'Target 1 location is same as stimulus location, 1 or 2
                        laTarget2Loc%[tc%] := tempTarg%;  'Target 2 location is determined just above
                        laLocsPresent%[tc%] := JF%[j%]+1+4+8;  'S1 plus both S2s present
                        laPage1Draw%[tc%] := JF%[j%]+1+4+8;  'S1 plus both S2s present on page 1
                        if m% = 0 then  'S1-cue is ortho
                            laPage1Ortho%[tc%] := JF%[j%]+1+tempTarg%;  'S1-Cue location and S2-target location are ortho
                        else
                            laPage1Ortho%[tc%] := 12-tempTarg%;  'S2-distractor location is ortho, 12-tempTarg% works
                        endif
                        
                        if JF%[j%] = 0 then
                            if m% = 0 then
                                laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                            else
                                laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                            endif
                        else
                            if m% = 0 then
                                laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                            else
                                laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                            endif
                        endif
                        if m% = 0 then 'if target is ortho
                            if tempTarg% = 4 then  'if S2 target is loc2a
                                laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Target, Ortho; ";
                                laInitialST$[tc%] += "S2 x = " + Str$(laLoc2bXDeg) + ", y = " + Str$(laLoc2bYDeg) + ", Dist; ";
                            else
                                laInitialST$[tc%] += "S2 x = " + Str$(laLoc2bXDeg) + ", y = " + Str$(laLoc2bYDeg) + ", Target, Ortho; ";
                                laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Dist; ";
                            endif
                        else  'if target is Iso
                            if tempTarg% = 4 then
                                laInitialST$[tc%] += "S2 x = " + Str$(laLoc2bXDeg) + ", y = " + Str$(laLoc2bYDeg) + ", Target; ";
                                laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Dist, Ortho; ";
                            else
                                laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Target; ";
                                laInitialST$[tc%] += "S2 x = " + Str$(laLoc2bXDeg) + ", y = " + Str$(laLoc2bYDeg) + ", Dist, Ortho; ";
                            endif
                        endif
                        
                        tc% += 1;  'Increment index
                    next
                next
            next
        case laTrainingStageDS2S2% = 4 then
            for j% := 0 to nJF%-1 do
                for m% := 0 to 1 do 'this is orientation of S1-cue
                    for n% := 0 to laNRepeats%-1 do
                        tempTarg% := 4 + (4*round(rand()));  'place S2-target in position 4 or 8 randomly
                        laTarget1Loc%[tc%] := JF%[j%]+1;  'Target 1 location is same as stimulus location, 1 or 2
                        laTarget2Loc%[tc%] := tempTarg%;  'Target 2 location is determined just above
                        laLocsPresent%[tc%] := JF%[j%]+1+4+8;  'S1 plus both S2s present
                        laPage1Draw%[tc%] := 4+8;  'Both S2s present on page 2
                        laPage2Draw%[tc%] := JF%[j%]+1+4+8;  'S1 plus both S2s present on page 2
                        if m% = 0 then  'S1-cue is ortho
                            laPage1Ortho%[tc%] := tempTarg%;  'S2-target location is ortho
                            laPage2Ortho%[tc%] := JF%[j%]+1+tempTarg%;  'S1-Cue location and S2-target location are ortho
                        else
                            laPage1Ortho%[tc%] := 12-tempTarg%;  'S2-distractor location is ortho, 12-tempTarg% works
                            laPage2Ortho%[tc%] := 12-tempTarg%;  
                        endif
                        
                        if JF%[j%] = 0 then
                            if m% = 0 then
                                laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                            else
                                laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                            endif
                        else
                            if m% = 0 then
                                laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                            else
                                laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                            endif
                        endif
                        if m% = 0 then 'if target is ortho
                            if tempTarg% = 4 then  'if S2 target is loc2a
                                laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Target, Ortho; ";
                                laInitialST$[tc%] += "S2 x = " + Str$(laLoc2bXDeg) + ", y = " + Str$(laLoc2bYDeg) + ", Dist; ";
                            else
                                laInitialST$[tc%] += "S2 x = " + Str$(laLoc2bXDeg) + ", y = " + Str$(laLoc2bYDeg) + ", Target, Ortho; ";
                                laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Dist; ";
                            endif
                        else  'if target is Iso
                            if tempTarg% = 4 then
                                laInitialST$[tc%] += "S2 x = " + Str$(laLoc2bXDeg) + ", y = " + Str$(laLoc2bYDeg) + ", Target; ";
                                laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Dist, Ortho; ";
                            else
                                laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Target; ";
                                laInitialST$[tc%] += "S2 x = " + Str$(laLoc2bXDeg) + ", y = " + Str$(laLoc2bYDeg) + ", Dist, Ortho; ";
                            endif
                        endif
                        
                        tc% += 1;  'Increment index
                    next
                next
            next
        case laTrainingStageDS2S2% = 5 then
            for i% := 0 to nJ%-1 do
                for j% := 0 to nJF%-1 do
                    for m% := 0 to 1 do 'this is orientation of S1-cue
                        for n% := 0 to laNRepeats%-1 do
                            tempTarg% := 4 + (4*round(rand()));  'place S2-target in position 4 or 8 randomly
                            laTarget1Loc%[tc%] := JF%[j%]+1;  'Target 1 location is same as stimulus location, 1 or 2
                            laTarget2Loc%[tc%] := tempTarg%;  'Target 2 location is determined just above
                            laLocsPresent%[tc%] := JF%[j%]+1+4+8;  'S1 plus both S2s present
                            laPage1Draw%[tc%] := 4+8;  'Both S2s present on page 2
                            laPage2Draw%[tc%] := JF%[j%]+1+4+8;  'S1 plus both S2s present on page 2
                            laPage3Draw%[tc%] := JF%[j%]+1+4+8;  'S1 plus both S2s present on page 3
                            laPage3Fade%[tc%] := JF%[j%]+1+4+8;  'S1 plus both S2s all fade on page 3
                            if m% = 0 then  'S1-cue is ortho
                                laPage1Ortho%[tc%] := tempTarg%;  'S2-target location is ortho
                                laPage2Ortho%[tc%] := JF%[j%]+1+tempTarg%;  'S1-Cue location and S2-target location are ortho
                                laPage3Ortho%[tc%] := JF%[j%]+1+tempTarg%;  'S1-Cue location and S2-target location are ortho
                            else
                                laPage1Ortho%[tc%] := 12-tempTarg%;  'S2-distractor location is ortho, 12-tempTarg% works
                                laPage2Ortho%[tc%] := 12-tempTarg%;  
                                laPage3Ortho%[tc%] := 12-tempTarg%; 
                            endif
                            laOptoThisTrial%[tc%] := JAWS%[i%];  'JAWS yes/no 1/0
                            
                            if JF%[j%] = 0 then
                                if m% = 0 then
                                    laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho, Fade out; ";
                                else
                                    laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Fade out; ";
                                endif
                            else
                                if m% = 0 then
                                    laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho, Fade out; ";
                                else
                                    laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Fade out; ";
                                endif
                            endif
                            if m% = 0 then 'if target is ortho
                                if tempTarg% = 4 then  'if S2 target is loc2a
                                    laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Target, Ortho, Fade out; ";
                                    laInitialST$[tc%] += "S2 x = " + Str$(laLoc2bXDeg) + ", y = " + Str$(laLoc2bYDeg) + ", Dist, Fade out; ";
                                else
                                    laInitialST$[tc%] += "S2 x = " + Str$(laLoc2bXDeg) + ", y = " + Str$(laLoc2bYDeg) + ", Target, Ortho, Fade out; ";
                                    laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Dist, Fade out; ";
                                endif
                            else  'if target is Iso
                                if tempTarg% = 4 then
                                    laInitialST$[tc%] += "S2 x = " + Str$(laLoc2bXDeg) + ", y = " + Str$(laLoc2bYDeg) + ", Target, Fade out; ";
                                    laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Dist, Ortho, Fade out; ";
                                else
                                    laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Target, Fade out; ";
                                    laInitialST$[tc%] += "S2 x = " + Str$(laLoc2bXDeg) + ", y = " + Str$(laLoc2bYDeg) + ", Dist, Ortho, Fade out; ";
                                endif
                            endif
                            'The JAWS status is independent of whether the stimulus is in the JAWS field
                            laInitialST$[tc%] += "JAWS = " + Str$(JAWS%[i%]) + "; ";
                            
                            tc% += 1;  'Increment index
                        next
                    next
                next
            next
        case laTrainingStageDS2S2% = 6 then
            for i% := 0 to nJ%-1 do
                for j% := 0 to nJF%-1 do
                    for m% := 0 to 1 do 'this is orientation of S1-cue
                        for n% := 0 to laNRepeats%-1 do
                            tempTarg% := 4 + (4*round(rand()));  'place S2-target in position 4 or 8 randomly
                            laTarget1Loc%[tc%] := JF%[j%]+1;  'Target 1 location is same as stimulus location, 1 or 2
                            laTarget2Loc%[tc%] := tempTarg%;  'Target 2 location is determined just above
                            laLocsPresent%[tc%] := JF%[j%]+1+4+8;  'S1 plus both S2s present
                            laPage1Draw%[tc%] := 4+8;  'Both S2s present on page 2
                            laPage2Draw%[tc%] := JF%[j%]+1+4+8;  'S1 plus both S2s present on page 2
                            if m% = 0 then  'S1-cue is ortho
                                laPage1Ortho%[tc%] := tempTarg%;  'S2-target location is ortho
                                laPage2Ortho%[tc%] := JF%[j%]+1+tempTarg%;  'S1-Cue location and S2-target location are ortho
                            else
                                laPage1Ortho%[tc%] := 12-tempTarg%;  'S2-distractor location is ortho, 12-tempTarg% works
                                laPage2Ortho%[tc%] := 12-tempTarg%;  
                            endif
                            laOptoThisTrial%[tc%] := JAWS%[i%];  'JAWS yes/no 1/0
                            
                            if JF%[j%] = 0 then
                                if m% = 0 then
                                    laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + ", Ortho; ";
                                else
                                    laInitialST$[tc%] := "S1 x = " + Str$(laLoc1aXDeg) + ", y = " + Str$(laLoc1aYDeg) + "; ";
                                endif
                            else
                                if m% = 0 then
                                    laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + ", Ortho; ";
                                else
                                    laInitialST$[tc%] := "S1 x = " + Str$(laLoc1bXDeg) + ", y = " + Str$(laLoc1bYDeg) + "; ";
                                endif
                            endif
                            if m% = 0 then 'if target is ortho
                                if tempTarg% = 4 then  'if S2 target is loc2a
                                    laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Target, Ortho; ";
                                    laInitialST$[tc%] += "S2 x = " + Str$(laLoc2bXDeg) + ", y = " + Str$(laLoc2bYDeg) + ", Dist; ";
                                else
                                    laInitialST$[tc%] += "S2 x = " + Str$(laLoc2bXDeg) + ", y = " + Str$(laLoc2bYDeg) + ", Target, Ortho; ";
                                    laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Dist; ";
                                endif
                            else  'if target is Iso
                                if tempTarg% = 4 then
                                    laInitialST$[tc%] += "S2 x = " + Str$(laLoc2bXDeg) + ", y = " + Str$(laLoc2bYDeg) + ", Target; ";
                                    laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Dist, Ortho; ";
                                else
                                    laInitialST$[tc%] += "S2 x = " + Str$(laLoc2aXDeg) + ", y = " + Str$(laLoc2aYDeg) + ", Target; ";
                                    laInitialST$[tc%] += "S2 x = " + Str$(laLoc2bXDeg) + ", y = " + Str$(laLoc2bYDeg) + ", Dist, Ortho; ";
                                endif
                            endif
                            'The JAWS status is independent of whether the stimulus is in the JAWS field
                            laInitialST$[tc%] += "JAWS = " + Str$(JAWS%[i%]) + "; ";
                            
                            tc% += 1;  'Increment index
                        next
                    next
                next
            next
        endcase    
    endcase
    
    'Randomize trial order
    for i% := 0 to nTrials% do
        laTrialOrder%[i%] := i%;  'Build variable with 0 to N-1 sequentially (I feel like there's a built-in way to do this but I can't find it)
    next
    '-1 option to ArrSort shuffles; is possible to include up to 18(!!) arrays to also shuffle into this identical order
    ArrSort(laTrialOrder%[0:nTrials%],-1,laTarget1Loc%[0:nTrials%],laTarget2Loc%[0:nTrials%],laLocsPresent%[0:nTrials%],
            laPage1Draw%[0:nTrials%],laPage2Draw%[0:nTrials%],laPage3Draw%[0:nTrials%],laOptoThisTrial%[0:nTrials%],
            laMicroThisTrial%[0:nTrials%],laPage1Fade%[0:nTrials%],laPage2Fade%[0:nTrials%],laPage3Fade%[0:nTrials%],
            laPage1Ortho%[0:nTrials%],laPage2Ortho%[0:nTrials%],laPage3Ortho%[0:nTrials%],laInitialST$[:nTrials%]);  
    'Currently at 16 variables being sorted!!  Only two to spare so if there are updates we need to be judicious
        
    'Write .txt file
    MultSaccHandle% := FileOpen(MultSaccFilename$,8,1);
    if MultSaccHandle% < 0 then
        printlog("Opening text file for writing failed with error %d\n",MultSaccHandle%);
        halt;
    endif;
    
    s := Seconds();
    for i% := 0 to nTrials%-1 do  'loop through every trial
        
        'Each trial is its own line.  Each trial is composed of pages.  
        'Pages are separated by " | "
        'Stimuli within each page are separated by " : "
        'Stimulus definition: " G <grating spec> "  We should be able to use a 15-value spec, include CTF even though we have it
        'Trial ends in "| END", separate by a \n
        
        'We are going to simply require each trial to have four pages.  (Rethink if we ever need a fifth page)
        'If there is no stimulus on a given page, we will pad with BKGD
        
        'Page 1 print
        DecodeLocsPresent(laPage1Draw%[i%],loc1ap%,loc1bp%,loc2ap%,loc2bp%);  'fill these four variables with 1/0 depending on whether that location is present on this page
        DecodeLocsPresent(laPage1Fade%[i%],loc1af%,loc1bf%,loc2af%,loc2bf%);  'same but 1/0 for fade
        DecodeLocsPresent(laPage1Ortho%[i%],loc1ao%,loc1bo%,loc2ao%,loc2bo%);  'same but 1/0 for orthogonal orientation
        numGratings% := loc1ap% + loc1bp% + loc2ap% + loc2bp%;
        if numGratings% = 0 then
            Print("BKGD | ");  'If no grating is present, print a blank page
        else
            colonOrNot$ := "";  'For grating separation within a page, reset at beginning of page
            if loc1ap% = 1 then  'If location 1a is present
                numGratings% -= 1;  'Decrement number of gratings
                if numGratings% > 0 then
                    colonOrNot$ := " : ";  'If there are any gratings left, separate with colon
                else
                    colonOrNot$ := " | ";  'If this is the last grating on the page, separate with pipe
                endif
                if loc1af% = 1 then 'If location 1a is faded
                    if loc1ao% = 1 then 'If location 1a is orthogonal
                        Print("G %s%s",g1afo$,colonOrNot$);  'Faded and orthogonal
                    else
                        Print("G %s%s",g1af$,colonOrNot$);   'Faded
                    endif
                else
                    if loc1ao% = 1 then 'If location 1a is orthogonal
                        Print("G %s%s",g1ao$,colonOrNot$);   'Orthogonal
                    else
                        Print("G %s%s",g1a$,colonOrNot$);    'Regular
                    endif
                endif
            endif
            if loc1bp% = 1 then  'If location 1b is present
                numGratings% -= 1;  'Decrement number of gratings
                if numGratings% > 0 then
                    colonOrNot$ := " : ";  'If there are any gratings left, separate with colon
                else
                    colonOrNot$ := " | ";  'If this is the last grating on the page, separate with pipe
                endif
                if loc1bf% = 1 then 'If location 1b is faded
                    if loc1bo% = 1 then 'If location 1b is orthogonal
                        Print("G %s%s",g1bfo$,colonOrNot$);  'Faded and orthogonal
                    else
                        Print("G %s%s",g1bf$,colonOrNot$);   'Faded
                    endif
                else
                    if loc1bo% = 1 then 'If location 1b is orthogonal
                        Print("G %s%s",g1bo$,colonOrNot$);   'Orthogonal
                    else
                        Print("G %s%s",g1b$,colonOrNot$);    'Regular
                    endif
                endif
            endif
            if loc2ap% = 1 then  'If location 2a is present
                numGratings% -= 1;  'Decrement number of gratings
                if numGratings% > 0 then
                    colonOrNot$ := " : ";  'If there are any gratings left, separate with colon
                else
                    colonOrNot$ := " | ";  'If this is the last grating on the page, separate with pipe
                endif
                if loc2af% = 1 then 'If location 2a is faded
                    if loc2ao% = 1 then 'If location 2a is orthogonal
                        Print("G %s%s",g2afo$,colonOrNot$);  'Faded and orthogonal
                    else
                        Print("G %s%s",g2af$,colonOrNot$);   'Faded
                    endif
                else
                    if loc2ao% = 1 then 'If location 2a is orthogonal
                        Print("G %s%s",g2ao$,colonOrNot$);   'Orthogonal
                    else
                        Print("G %s%s",g2a$,colonOrNot$);    'Regular
                    endif
                endif
            endif
            if loc2bp% = 1 then  'If location 2b is present
                numGratings% -= 1;  'Decrement number of gratings
                if numGratings% > 0 then
                    message("On final grating of page, numGratings did not decrement to zero!  Value is " + Str$(numGratings%) + " Uh-oh!");
                    FileClose(MultSaccHandle%);
                    halt;
                else
                    colonOrNot$ := " | ";  'If this is the last grating on the page, separate with pipe
                endif
                if loc2bf% = 1 then 'If location 2b is faded
                    if loc2bo% = 1 then 'If location 2b is orthogonal
                        Print("G %s%s",g2bfo$,colonOrNot$);  'Faded and orthogonal
                    else
                        Print("G %s%s",g2bf$,colonOrNot$);   'Faded
                    endif
                else
                    if loc2bo% = 1 then 'If location 2b is orthogonal
                        Print("G %s%s",g2bo$,colonOrNot$);   'Orthogonal
                    else
                        Print("G %s%s",g2b$,colonOrNot$);    'Regular
                    endif
                endif
                'No more gratings on this page, don't need to update grating separator
            endif
        endif
        
        'Page 2 print
        DecodeLocsPresent(laPage2Draw%[i%],loc1ap%,loc1bp%,loc2ap%,loc2bp%);  'is-present version
        DecodeLocsPresent(laPage2Fade%[i%],loc1af%,loc1bf%,loc2af%,loc2bf%);  'fade version
        DecodeLocsPresent(laPage2Ortho%[i%],loc1ao%,loc1bo%,loc2ao%,loc2bo%);  'ortho version
        numGratings% := loc1ap% + loc1bp% + loc2ap% + loc2bp%;
        if numGratings% = 0 then
            Print("BKGD | ");  'If no grating is present, print a blank page
        else
            'On page 2 for expt=0 training step=0 we will use laLoc2bXDeg (it's a float!) as a fixpt fade
            if laExperimentType% = 0 and laTrainingStageSSGNG% = 0 then  'If we are fading the fixation point, we will put that first and ASSUME there is a grating on the page
                'We can use a basically standard fixation point spec 
                GetFixationPointParameters();  'Use this to fill FixationX, FixationY, etc. - all the values used below will be populated
                F$ := str$(FixationX) + "," + str$(FixationY) + "," + str$(FixationDiameter) + ",";
                'But we need to update the fixation color
                docase  'start by getting the fixation color, subtract out BG
                case iFixationColor% = 0 then  
                    FR% := 255;
                    FG% := 0;
                    FB% := 0;
                case iFixationColor% = 1 then  
                    FR% := 0;
                    FG% := 255;
                    FB% := 0;
                case iFixationColor% = 2 then  
                    FR% := 0;
                    FG% := 0;
                    FB% := 255;
                else
                    FR% := FixationR%;
                    FG% := FixationG%;
                    FB% := FixationB%;
                endcase;
                'Background is hardcoded at gray (128/128/128)
                FR% := FR% - 128;
                FG% := FG% - 128;
                FB% := FB% - 128;
                FR% := 128 + (FR%*laLoc2bXDeg/100);  'laLoc2bXDeg is just the value we are using as the factor!
                FG% := 128 + (FG%*laLoc2bXDeg/100);
                FB% := 128 + (FB%*laLoc2bXDeg/100);
                FC$ := "(" + Str$(FR%) + "/" + Str$(FG%) + "/" + Str$(FB%) + ")";
                Print("F %s%s : ",F$,FC$);  'Fixpt spec always has a colon, there will be a grating
            endif
            if loc1ap% = 1 then  'If location 1a is present
                numGratings% -= 1;  'Decrement number of gratings
                if numGratings% > 0 then
                    colonOrNot$ := " : ";  'If there are any gratings left, separate with colon
                else
                    colonOrNot$ := " | ";  'If this is the last grating on the page, separate with pipe
                endif
                if loc1af% = 1 then 'If location 1a is faded
                    if loc1ao% = 1 then 'If location 1a is orthogonal
                        Print("G %s%s",g1afo$,colonOrNot$);  'Faded and orthogonal
                    else
                        Print("G %s%s",g1af$,colonOrNot$);   'Faded
                    endif
                else
                    if loc1ao% = 1 then 'If location 1a is orthogonal
                        Print("G %s%s",g1ao$,colonOrNot$);   'Orthogonal
                    else
                        Print("G %s%s",g1a$,colonOrNot$);    'Regular
                    endif
                endif
            endif
            if loc1bp% = 1 then  'If location 1b is present
                numGratings% -= 1;  'Decrement number of gratings
                if numGratings% > 0 then
                    colonOrNot$ := " : ";  'If there are any gratings left, separate with colon
                else
                    colonOrNot$ := " | ";  'If this is the last grating on the page, separate with pipe
                endif
                if loc1bf% = 1 then 'If location 1b is faded
                    if loc1bo% = 1 then 'If location 1b is orthogonal
                        Print("G %s%s",g1bfo$,colonOrNot$);  'Faded and orthogonal
                    else
                        Print("G %s%s",g1bf$,colonOrNot$);   'Faded
                    endif
                else
                    if loc1bo% = 1 then 'If location 1b is orthogonal
                        Print("G %s%s",g1bo$,colonOrNot$);   'Orthogonal
                    else
                        Print("G %s%s",g1b$,colonOrNot$);    'Regular
                    endif
                endif
            endif
            if loc2ap% = 1 then  'If location 2a is present
                numGratings% -= 1;  'Decrement number of gratings
                if numGratings% > 0 then
                    colonOrNot$ := " : ";  'If there are any gratings left, separate with colon
                else
                    colonOrNot$ := " | ";  'If this is the last grating on the page, separate with pipe
                endif
                if loc2af% = 1 then 'If location 2a is faded
                    if loc2ao% = 1 then 'If location 2a is orthogonal
                        Print("G %s%s",g2afo$,colonOrNot$);  'Faded and orthogonal
                    else
                        Print("G %s%s",g2af$,colonOrNot$);   'Faded
                    endif
                else
                    if loc2ao% = 1 then 'If location 2a is orthogonal
                        Print("G %s%s",g2ao$,colonOrNot$);   'Orthogonal
                    else
                        Print("G %s%s",g2a$,colonOrNot$);    'Regular
                    endif
                endif
            endif
            if loc2bp% = 1 then  'If location 2b is present
                numGratings% -= 1;  'Decrement number of gratings
                if numGratings% > 0 then
                    message("On final grating of page, numGratings did not decrement to zero!  Value is " + Str$(numGratings%) + " Uh-oh!");
                    FileClose(MultSaccHandle%);
                    halt;
                else
                    colonOrNot$ := " | ";  'If this is the last grating on the page, separate with pipe
                endif
                if loc2bf% = 1 then 'If location 2b is faded
                    if loc2bo% = 1 then 'If location 2b is orthogonal
                        Print("G %s%s",g2bfo$,colonOrNot$);  'Faded and orthogonal
                    else
                        Print("G %s%s",g2bf$,colonOrNot$);   'Faded
                    endif
                else
                    if loc2bo% = 1 then 'If location 2b is orthogonal
                        Print("G %s%s",g2bo$,colonOrNot$);   'Orthogonal
                    else
                        Print("G %s%s",g2b$,colonOrNot$);    'Regular
                    endif
                endif
                'No more gratings on this page, don't need to update grating separator
            endif
        endif
        
        'Page 3 print
        DecodeLocsPresent(laPage3Draw%[i%],loc1ap%,loc1bp%,loc2ap%,loc2bp%);  'is-present version
        DecodeLocsPresent(laPage3Fade%[i%],loc1af%,loc1bf%,loc2af%,loc2bf%);  'fade version
        DecodeLocsPresent(laPage3Ortho%[i%],loc1ao%,loc1bo%,loc2ao%,loc2bo%);  'ortho version
        numGratings% := loc1ap% + loc1bp% + loc2ap% + loc2bp%;
        if numGratings% = 0 then
            Print("BKGD | ");  'If no grating is present, print a blank page
        else
            if loc1ap% = 1 then  'If location 1a is present
                numGratings% -= 1;  'Decrement number of gratings
                if numGratings% > 0 then
                    colonOrNot$ := " : ";  'If there are any gratings left, separate with colon
                else
                    colonOrNot$ := " | ";  'If this is the last grating on the page, separate with pipe
                endif
                if loc1af% = 1 then 'If location 1a is faded
                    if loc1ao% = 1 then 'If location 1a is orthogonal
                        Print("G %s%s",g1afo$,colonOrNot$);  'Faded and orthogonal
                    else
                        Print("G %s%s",g1af$,colonOrNot$);   'Faded
                    endif
                else
                    if loc1ao% = 1 then 'If location 1a is orthogonal
                        Print("G %s%s",g1ao$,colonOrNot$);   'Orthogonal
                    else
                        Print("G %s%s",g1a$,colonOrNot$);    'Regular
                    endif
                endif
            endif
            if loc1bp% = 1 then  'If location 1b is present
                numGratings% -= 1;  'Decrement number of gratings
                if numGratings% > 0 then
                    colonOrNot$ := " : ";  'If there are any gratings left, separate with colon
                else
                    colonOrNot$ := " | ";  'If this is the last grating on the page, separate with pipe
                endif
                if loc1bf% = 1 then 'If location 1b is faded
                    if loc1bo% = 1 then 'If location 1b is orthogonal
                        Print("G %s%s",g1bfo$,colonOrNot$);  'Faded and orthogonal
                    else
                        Print("G %s%s",g1bf$,colonOrNot$);   'Faded
                    endif
                else
                    if loc1bo% = 1 then 'If location 1b is orthogonal
                        Print("G %s%s",g1bo$,colonOrNot$);   'Orthogonal
                    else
                        Print("G %s%s",g1b$,colonOrNot$);    'Regular
                    endif
                endif
            endif
            if loc2ap% = 1 then  'If location 2a is present
                numGratings% -= 1;  'Decrement number of gratings
                if numGratings% > 0 then
                    colonOrNot$ := " : ";  'If there are any gratings left, separate with colon
                else
                    colonOrNot$ := " | ";  'If this is the last grating on the page, separate with pipe
                endif
                if loc2af% = 1 then 'If location 2a is faded
                    if loc2ao% = 1 then 'If location 2a is orthogonal
                        Print("G %s%s",g2afo$,colonOrNot$);  'Faded and orthogonal
                    else
                        Print("G %s%s",g2af$,colonOrNot$);   'Faded
                    endif
                else
                    if loc2ao% = 1 then 'If location 2a is orthogonal
                        Print("G %s%s",g2ao$,colonOrNot$);   'Orthogonal
                    else
                        Print("G %s%s",g2a$,colonOrNot$);    'Regular
                    endif
                endif
            endif
            if loc2bp% = 1 then  'If location 2b is present
                numGratings% -= 1;  'Decrement number of gratings
                if numGratings% > 0 then
                    message("On final grating of page, numGratings did not decrement to zero!  Value is " + Str$(numGratings%) + " Uh-oh!");
                    FileClose(MultSaccHandle%);
                    halt;
                else
                    colonOrNot$ := " | ";  'If this is the last grating on the page, separate with pipe
                endif
                if loc2bf% = 1 then 'If location 2b is faded
                    if loc2bo% = 1 then 'If location 2b is orthogonal
                        Print("G %s%s",g2bfo$,colonOrNot$);  'Faded and orthogonal
                    else
                        Print("G %s%s",g2bf$,colonOrNot$);   'Faded
                    endif
                else
                    if loc2bo% = 1 then 'If location 2b is orthogonal
                        Print("G %s%s",g2bo$,colonOrNot$);   'Orthogonal
                    else
                        Print("G %s%s",g2b$,colonOrNot$);    'Regular
                    endif
                endif
                'No more gratings on this page, don't need to update grating separator
            endif
        endif
        
        'Page 4 print, and end of trial
        Print("BKGD | END\n");  'Page 4 is always blank. Close line, end of trial.  
        
    next
    
    FileClose(MultSaccHandle%);
    printlog("A total of %d trials required %f seconds to create and write to text file!\n",nTrials%,Seconds()-s);
    
    'Halt for testing, file write has been basically verified
    'message("Testing!  Halting after writing .txt!");
    'halt;
    
    'Start sampling *after* building the big text file - not that it should take any appreciable time
    
    if UseTwo1401s% = 1 then
        SampleStart(0);  'Set sampling to start immediately
        Yield(0.5);  'Wait half a second
        'Look for handshake, unless disabled
        while pulseFound% < 1 and startSecs > 0 and Dual1401IgnoreHandshake% = 0 do
            pulseFound% := View(DataWindow%).FindPulseUp%(TimingChannel%, 0, tRise, tFall);
            yield(0.1);
            startSecs := startSecs - 0.1;
        wend
        'Send timing pulse
        SampleSeqVar(11,20);  'set for 20 ms pulse (Was not specified!  Two 1401s has been inactive for years and "T" may have been accidentally co-opted?)
        SafeSampleKey("T");
    else
        SampleStart(0); 'Start sampling now
    endif;
    
    if startSecs <= 0 then
        message("Handshake not found in 5 seconds!  Quitting!");
        halt
    endif
    
    
    if laDoOpto% = 1 then
        'set sequencer variable 4 for opto voltage
        'Please note that the input for this has to be a 32-bit variable. Use vdac32% to get the right value.
        voltageInteger% := vdac32%(laOptoVoltageOut, 1, 0);
        SampleSeqVar(4,voltageInteger%);
        printlog("Voltage integer is %d\n",voltageInteger%);
    endif;
    
    
    'Set sequencer variable 5, this value is appropriate for no rivalry
    SampleSeqVar(5, 0);
    
    
	' Set Sequencer Variable #3 based on juicer type 
    SetJuicerSequencerVariable%();
    ' Clear any trigger bits on digout lines.
    SafeSampleKey("0");
    
    'Get the clock period of the sequencer, in MS, must do this after starting sampling
    SequencerPeriodMS := SampleSeqClock(1);  'This variable may go unused, but just in case...
    
    
    'Begin building the command line argument
    Opener$ := "cmd /k " + bin$;

    'Get remote args, program name
    if GetUseRemoteStimulus%() = 1 then
        ProgName$ := "\\remote.exe "; 'set program name for one VSG
        RemoteArg$  := " " + GetRemoteStimulusIP$() + " " + GetRemoteStimulusPort$() + " fixstim ";
    else
        Message("You must select Use Remote Stimulus in Config-->DAQ to use this script!");
        halt;
    endif;
    
    'Set verbosity, for now I don't think we want verbose (" -v ") on
    Verbose$ := ""; 
    
    'Set trigger port
    TriggerPort$ := " -p 2 ";  'This one's hard-coded for now (kinda for always)
    
    'Set background color, right now we'll hard code to gray
    BGColor$ := " -b gray ";
    
    'Set distance to screen
    Dist2Screen$ := " -d " + GetDistanceToScreenMM$();
    
    'Get fixation argument
    FixationArg$ := GetFixationArg$();
    
    'Set multi-saccade option
    MultSacc$ := " --multi-sac ";
    
    
    'Build command line
    CommandLine$ := Opener$ + ProgName$ + RemoteArg$ + Verbose$ + TriggerPort$ + FixationArg$ + BGColor$ + Dist2Screen$ + MultSacc$ + MultSaccFilename$;
    
    
    ' Initial text marks
    ' djs Always version 3. NO difference if maintainmode is used or not. 
    SampleText("LookAway,3," + str$(Len(CommandLine$)));
    'SampleText(laCVSID$);  'Like, we don't even do this anymore
    for i% := 1 to Len(CommandLine$) step 100 do
        SampleText(Mid$(CommandLine$, i%, 100));
    next 
    
    
    'Begin the stimulus program. It will take a few seconds for the VSG to initialize.
    PrintLog(CommandLine$+"\n");
    StimHandle% := ProgRun(CommandLine$,1);
    if StimHandle% <0 then 
        Message("Could not start stimulus."); 
        halt; 
    endif


    'If we are asking the eyetracker to record an output file, open the file and start recording
    if RecordEyeTrackerOutputFile% = 1 then
        SafeSampleKey("I");  'Open the file (this is done by setting a DIGLOW bit), file name will be saved in a sampletext
        yield(0.5);
        SafeSampleKey("W");  'Begin recording the file
        yield(0.5);
    endif
    
    
	ToolbarSet(0,"",IdleProcessing%);	'Enable the IdleProcessing function
	ToolbarEnable(2,1);  'Enable Stop
	ToolbarEnable(1,0);  'Disable Start
    ToolbarEnable(4,0);  'Disable Quit, must use Stop
	View(DataWindow%);
	Yield(5); 'Wait a few seconds to make sure the VSG has time to initialize.
	return 1;
end;


'''''StartPlexon'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func StartPlexon%()
    
    var fp$;  'to hold current file path
    fp$ := SetPathToScriptDirectory$();
    CreateSampleConfiguration();    
    
    StartSecondInstanceOfSpike2();
    
    FilePathSet(fp$);  'change the file path back to what it was
    fp$ := FilePath$();  'read out to allow verification
    printlog("%s\n",fp$); 'and tell the world to verify
    
    ToolbarSet(1,"Start SECOND",Start%);  'change button 1 on the toolbar, this may not work
    
    ' Get display windows ready
    InitializeWindows();    
    
    return 1; 'stay in toolbar    
    
end






''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Run real time analysis here. 
func IdleProcessing%()
	var iStatus% := 1;	' this is return value. value of 1 (0) continues (stops) processing
    var tOpt;
    var jtc%;   'Used as a Jaws trial count in some reward calculations
    'var tStimOn;  'tLast does not work to find stim off if we have intervening steps in the state logic, which we do.
    
	tNow := View(DataWindow%).MaxTime();
    GetAllFixationPosition(DataWindow%,XChannel%,YChannel%,XChannelPurkinje%,YChannelPurkinje%,tNow);
    
    
	' Don't update display every time. 
	' Note that this stim displays eye continuously, without erasing... 
	if tNow-tLastUpdate > .005 then
        '        if iState% = stateWaitForAnswer% and iStarPosChannel% > 0 then
        '            View(StarWindow%).XYAddData(iStarPosChannel%, xEye, yEye);
        '        endif
        UpdateFixationDisplay(XYWindow%);
		tLastUpdate := tNow;
	endif

    ' What state are we in? 
    docase 
        
    case iState% = stateVSGWait% then
        if View(DataWindow%).FindPulseUp%(ReadyChannel%, -1, tTrigger, tFall) = 1 then
            LogStatus("VSGWait", "Got ready pulse at exactly " + str$(tTrigger));
            ChangeStateTo(stateStartTrial%, tNow);
            if RecordEyeTrackerOutputFile% = 1 then
                'Give pattern of four pulses - this is the initializing pattern for both the NIC EEG file and the eyetracker file
                SafeSampleKey("1");
                yield(0.2);
                SafeSampleKey("1");
                yield(0.2);
                SafeSampleKey("1");
                yield(0.2);
                SafeSampleKey("1");
                yield(0.2);
            endif;
            
            tc% := -1;  'When entering the idle loop, reset the trial counter
            
        endif
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    case iState% = stateStartTrial% then
        'put timing marker in both eyetracker file, smr file
        if RecordEyeTrackerOutputFile% = 1 then
            docase
            case HBCycle% = 1 then
                SafeSampleKey("1");
            case HBCycle% = 2 then
                SafeSampleKey("2");
            case HBCycle% = 3 then
                SafeSampleKey("3");
            case HBCycle% = 4 then
                SafeSampleKey("4");
            case HBCycle% = 5 then
                SafeSampleKey("5");
            case HBCycle% = 6 then
                SafeSampleKey("6");
            case HBCycle% = 7 then
                SafeSampleKey("7");
            endcase
            HBCycle% += 1;  'increment HBCycle%
            if HBCycle% = 8 then  'and cycle when necessary
                HBCycle% := 1;
            endif
            yield(0.01);  'this will likely be positioned very close to the "F" below, so give a tiny bit of time, 10 ms should be enough
        endif;
        
        
        
        tc% += 1;   'Trial counter, it's an index to the various trial variables, will be zero-based, will decrement on repeated trials, on first trial will be -1
        
        
        'Randomize durations of various portions of the trial (will do it even when some portions don't exist)
        laFixationDuration := laFixationDurationMin + Rand(laFixationDurationVar, 0);
        laPage1Dur := laPage1DurationMin + Rand(laPage1DurationVar, 0);
        laPage2Dur := laPage2DurationMin + Rand(laPage2DurationVar, 0);
        laPage3Dur := laPage3DurationMin + Rand(laPage3DurationVar, 0);
        laSaccadeReleaseDelay := laSaccadeReleaseDelayMin + Rand(laSaccadeReleaseDelayVar, 0);  'Used only for full version task where stimuli are down before fixpt
        
        'For GNG experiment (id'ed here as fix down after = -1 but could also use experiment type 0)
        'we need to make the saccade acquisition time the same duration as the final page - there's
        'no fixation down to mark saccade initiaion period, it's just a change at the target that
        'triggers it.
        docase
        case laTrialFinalPage% = 2 and laFixDownAfterPage% = -1 then
            laSacc1AcqTime := laPage2Dur;
        case laTrialFinalPage% = 3 and laFixDownAfterPage% = -1 then
            laSacc1AcqTime := laPage3Dur;
        endcase
            
        
        'Recalculate tNow (in case HeartBeat code caused any noticeable delay)
        tNow := View(DataWindow%).MaxTime();
        
        'Do up trial start sampletext
        TrialStartText$ := "Trial " + Str$(tc%+1) + " Ready";
        SampleText(TrialStartText$,tNow);
        SampleText(laInitialST$[tc%],tNow+.001);
        
        'determine if we are doing opto on this trial
        if laDoOpto% = 1 then  'if 0, then laDoOptoThisTrial% will just be 0 from the jump
            if laOptoThisTrial%[tc%] = 1 then
                laDoOptoThisTrial% := 1;
                SampleText("Opto This Trial (" + Str$(tc%+1) + ")",tNow+.002);  'only sampletext for presence/absence of opto if laDoOpto% is on, no point if the whole experiment has no opto
            else
                laDoOptoThisTrial% := 0;
                SampleText("No Opto This Trial (" + Str$(tc%+1) + ")",tNow+.002);
            endif;
        endif;
        
        'determine if we are doing microstim on this trial, same logic as for opto
        if laDoMicro% = 1 then  'if 0, then laDoMicroThisTrial% will just be 0 from the jump
            if laMicroThisTrial%[tc%] = 1 then
                laDoMicroThisTrial% := 1;
                SampleText("Microstim This Trial (" + Str$(tc%+1) + ")",tNow+.003);  'offset by one ms to avoid collision with opto sampletext
            else
                laDoMicroThisTrial% := 0;
                SampleText("No Microstim This Trial (" + Str$(tc%+1) + ")",tNow+.003);
            endif;
        endif;
        
        'laTrialFinalPage% and laDoTwoSaccades% are already set, but update *only* in double-saccade training stage "2" 
        '(remember zero-based indexing here on training stages) because this stage allows mixture of single and double saccades for purposes of introduction
        if (laExperimentType% = 2 and laTrainingStageDS2S1% = 1) or (laExperimentType% = 3 and laTrainingStageDS2S2% = 1) then
            if laTarget2Loc%[tc%] > 0 then
                laTrialFinalPage% := 3;  'on two-saccade trials, stage 1, we have page 2 (S2 up) and page 3 (S1 down, release)
                laDoTwoSaccades% := 1;
            else
                laTrialFinalPage% := 1;
                laDoTwoSaccades% := 0;
            endif
        endif
        
        nTrialsStarted% += 1;
        if laDoOptoThisTrial% = 1 then
            nTrialsStartedJAWS% += 1;
        else
            nTrialsStartedNoJAWS% += 1;
        endif
        
        
        
        LogStatus("StartTrial", "Start trial #" + str$(tc%+1) + " at about " + str$(tNow) + ", Required fix time = " + str$(laFixationDuration));
        SafeSampleKey("F");  'Request Fixpt
        
        ChangeStateTo(stateWaitForFixPtOn%, tNow);         
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
         
    case iState% = stateWaitForFixPtOn% then
        if stateBegin% = 1 then
            LogStatus("WaitForFixPt", "Began waiting for fixation point at about " + str$(tNow));
            stateBegin% := 0;
        endif
        
        if View(DataWindow%).FindRisingEdge%(FixPointChannel%, tLast, tTrigger) = 0 then
            'Fixation point up. Display fix location and window.
            LogStatus("WaitForFixPt", "Fixation Point Up");
            DrawFix(1);
            SampleText("Fixpt Up",tTrigger);
            ChangeStateTo(stateWaitForAcquisition%, tNow);
        endif
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
               
    case iState% = stateWaitForAcquisition% then
        if stateBegin% = 1 then
            LogStatus("WaitForAcquisition", "Began waiting for fixation acquisition at about " + str$(tNow));
            stateBegin% := 0;
        endif
        if tNow-tStateStart < laFixAcquisitionTime then
            ' Acquisition happens when the eye falls within the fixation window.
            if LookingFixation%(xEye, yEye) > 0 then
                LogStatus("WaitForAcquisition", "Fixation Point Acquired");
                SampleText("Fixation Acquired",tNow);
                ChangeStateTo(stateHoldFixation%, tNow);
                
                'Turn on opto if requested at this stage - if it's not on and it starts at this stage, GO! 
                'This can't go early, if early opto is requested, so I'm moving it from starting at the hold
                'stage to ASAP once we know the fixpt is acquired, could save up to ~40 ms in the case of a
                'long chunk of time going to the OS in between idle cycles.
                if laDoOptoThisTrial% = 1 and  optoIsOn% = 0 and optoOnState% = stateHoldFixation% then
                    LogStatus("HoldFixation", "Request opto on at about " + str$(tNow));
                    SafeSampleKey("O");  'turn on opto
                    tOpt := View(DataWindow%).MaxTime();
                    printlog("OptoOn at about %f\n",tOpt);
                    SampleText("OptoOn",tOpt);  'Sampletext is approximate, opto copy channel will have record of TTL pulse
                    optoIsOn% := 1;  'Prevent opto from being turned on again
                endif
                
            endif
        else
            ' Acquisition failed. Turn off stim and try again.
            LogStatus("WaitForAcquisition", "Time out");
            ChangeStateTo(stateAbort%, tNow);
        endif        
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
          
    case iState% = stateHoldFixation% then
        if stateBegin% = 1 then
            LogStatus("HoldFixation", "Fixation began at about " + str$(tNow));
            stateBegin% := 0;
        endif
        if LookingFixation%(xEye,yEye) <= 0 then
            LogStatus("HoldFixation", "Broken fixation at about " + str$(tNow));
            ChangeStateTo(stateAbort%, tNow);
        else
            'Once fixation hold time is complete, request stimulus (Page 1 will be first)
            if tNow - tStateStart >= laFixationDuration then
                'Turn off opto if requested at this stage - if it's on and it stops at this stage, STOP!
                if laDoOptoThisTrial% = 1 and  optoIsOn% = 1 and optoOffState% = stateHoldFixation% then
                    LogStatus("HoldFixation", "Request opto off at about " + str$(tNow));
                    SafeSampleKey("o");  'turn off opto
                    tOpt := View(DataWindow%).MaxTime();
                    printlog("OptoOff at %f\n",tOpt);
                    SampleText("OptoOff",tOpt);  'Sampletext is approximate, opto copy channel will have record of TTL pulse
                    optoIsOn% := 0;
                endif
                
                'Request stimulus immediately, HoldFixation always goes to Page 1
                tNow := View(DataWindow%).MaxTime();
                LogStatus("HoldFixation", "Request target at about " + str$(tNow));                  
                
                SafeSampleKey("S");
                
                ChangeStateTo(stateWaitForPage1Up%, tNow);
            endif
            
        endif
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    case iState% = stateWaitForPage1Up% then
        if stateBegin% = 1 then
            LogStatus("WaitForPage1Up", "Began waiting for Page 1 up at about " + str$(tNow));
            stateBegin% := 0;
        endif
        ' Fixation may be broken while waiting for stim to come on. 
        if LookingFixation%(xEye,yEye) <= 0 then
            LogStatus("WaitForPage1Up", "Broken fixation at about " + str$(tNow));
            ChangeStateTo(stateAbort%, tNow);
        else
            ' Check if stim has come on
            if View(DataWindow%).FindRisingEdge%(StimChannel%, tLast, tTrigger) = 0 then
                LogStatus("WaitPage1Up", "Stimulus up (Page 1) at about " + str$(tNow));
                SampleText("Page 1 Up",tNow);
                'tStimOn := tTrigger;  'unused

                'Turn on opto if requested at this stage - if it's not on and it starts at this stage, GO!
                if laDoOptoThisTrial% = 1 and  optoIsOn% = 0 and optoOnState% = stateWaitThroughPage1% then
                    LogStatus("WaitPage1Up", "Request opto on at about " + str$(tNow));
                    SafeSampleKey("O");  'turn on opto
                    tOpt := View(DataWindow%).MaxTime();
                    printlog("OptoOn at %f\n",tOpt);  
                    SampleText("OptoOn",tOpt);  'Sampletext is approximate, opto copy channel will have record of TTL pulse 
                    optoIsOn% := 1;  'Prevent opto from being turned on again
                endif
                
                DrawTarget(1,1,tc%);
                
                ChangeStateTo(stateWaitThroughPage1%, tTrigger);
                
            endif
        endif
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    case iState% = stateWaitThroughPage1% then
        if stateBegin% = 1 then
            LogStatus("WaitThroughPage1", "Began waiting through Page 1 at about " + str$(tNow));
            stateBegin% := 0;
        endif        
        ' Fixation may be broken while waiting through page 1 
        if LookingFixation%(xEye,yEye) <= 0 then
            LogStatus("WaitThroughPage1", "Broken fixation at about " + str$(tNow));
            ChangeStateTo(stateAbort%, tNow);
        else
            if tNow - tStateStart >= laPage1Dur then  'Page 1 done
                'Turn off opto if requested at this stage - if it's on and it stops at this stage, STOP!
                if laDoOptoThisTrial% = 1 and  optoIsOn% = 1 and optoOffState% = stateWaitThroughPage1% then
                    LogStatus("WaitThroughPage1", "Request opto off at about " + str$(tNow));
                    SafeSampleKey("o");  'turn off opto
                    tOpt := View(DataWindow%).MaxTime();
                    printlog("OptoOff at %f\n",tOpt);
                    SampleText("OptoOff",tOpt);  'Sampletext is approximate, opto copy channel will have record of TTL pulse
                    optoIsOn% := 0;
                endif
                
                docase
                    '**checked**
                case laTrialFinalPage% = 1 and laSaccadeToBlank% = 1 then  'In the case of final-stage microsaccade experiment, we take down the stimulus
                    'Give hold reward on success, if requested
                    RewardSmall%(laPSmallRewardHoldTarg); 
                    
                    'Remove stimulus, will not yet allow saccade
                    SafeSampleKey("v");  'Updated logic, we will turn the stimulus to a blank page, rather than bring it down

                    ChangeStateTo(stateWaitForFinalBlankUp%, tNow);
                    

                case laTrialFinalPage% = 1 or laFixDownAfterPage% = 1 then  'in some training steps, we bring fixation down to allow saccade 1 but targets for saccade 2 are not up yet
                    'Give hold reward on success, if requested
                    RewardSmall%(laPSmallRewardHoldTarg); 
                    
                    'Remove fixation point as saccade release
                    SafeSampleKey("f");
                    WaitForFixptOffTo(stateWaitSaccade1%,tNow);

                else
                    'Request Page 2 and wait for it to come up
                    SafeSampleKey("v");  'u will toggle to the next page
                    ChangeStateTo(stateWaitForPage2Up%, tNow);  
                endcase

            endif
        endif;
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
         
    case iState% = stateWaitForPage2Up% then
        if stateBegin% = 1 then
            LogStatus("WaitForPage2Up", "Began waiting for Page 2 up at about " + str$(tNow));
            stateBegin% := 0;
        endif
        ' Fixation may be broken while waiting for Page 2 to come on. 
        if LookingFixation%(xEye,yEye) <= 0 then
            LogStatus("WaitForPage2Up", "Broken fixation at about " + str$(tNow));
            ChangeStateTo(stateAbort%, tNow);
        else
            ' Check if page has updated
            if View(DataWindow%).FindEdge%(PageToggleChannel%, tLast, tTrigger) > -1 then  'FindEdge returns 0 for a 0-->1 transition, and 1 for a 1-->0 transition, and we don't care which!
                LogStatus("WaitPage2Up", "Stimulus up (Page 2) at about " + str$(tNow));
                SampleText("Page 2 Up",tNow);
                'tStimOn := tTrigger;  'unused

                'Turn on opto if requested at this stage - if it's not on and it starts at this stage, GO!
                if laDoOptoThisTrial% = 1 and  optoIsOn% = 0 and optoOnState% = stateWaitThroughPage2% then
                    LogStatus("WaitPage2Up", "Request opto on at about " + str$(tNow));
                    SafeSampleKey("O");  'turn on opto
                    tOpt := View(DataWindow%).MaxTime();
                    printlog("OptoOn at %f\n",tOpt);
                    SampleText("OptoOn",tOpt);  'Sampletext is approximate, opto copy channel will have record of TTL pulse
                    optoIsOn% := 1;  'Prevent opto from being turned on again
                endif
                
                DrawTarget(1,2,tc%);
                
                if laTrialFinalPage% = 2 and laFixDownAfterPage% = -1 and laTarget1Loc%[tc%] > 0 then
                    'So if we're doing GNG and this is the last page, and the stimulus is a target,
                    'we do NOT take down fixation, saccade is now allowed (note: if stimulus is 
                    'non-target we will require fixation through Page 2)
                    ChangeStateTo(stateWaitSaccade1%, tTrigger);
                else
                    ChangeStateTo(stateWaitThroughPage2%, tTrigger);
                endif

            endif
        endif    
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    case iState% = stateWaitThroughPage2% then
        if stateBegin% = 1 then
            LogStatus("WaitThroughPage2", "Began waiting through Page 2 at about " + str$(tNow));
            stateBegin% := 0;
        endif         
        ' Fixation may be broken while waiting through page 2 
        if LookingFixation%(xEye,yEye) <= 0 then
            'If this is a no-go trial and it is the final page, this is a FAILURE, not an abort
            if laTrialFinalPage% = 2 and laFixDownAfterPage% = -1 and laTarget1Loc%[tc%] = 0 then
                LogStatus("WaitThroughPage2", "Broken fixation (fail on no-go trial) at about " + str$(tNow));
                ChangeStateTo(stateFailure%, tNow);
            else  '
                LogStatus("WaitThroughPage2", "Broken fixation at about " + str$(tNow));
                ChangeStateTo(stateAbort%, tNow);
            endif
        else
            if (tNow - tStateStart >= laPage2Dur) then  'Page 2 done
                'Turn off opto if requested at this stage - if it's on and it stops at this stage, STOP!
                if laDoOptoThisTrial% = 1 and  optoIsOn% = 1 and optoOffState% = stateWaitThroughPage2% then
                    LogStatus("WaitThroughPage2", "Request opto off at about " + str$(tNow));
                    SafeSampleKey("o");  'turn off opto
                    tOpt := View(DataWindow%).MaxTime();
                    printlog("OptoOff at %f\n",tOpt);
                    SampleText("OptoOff",tOpt);  'Sampletext is approximate, opto copy channel will have record of TTL pulse
                    optoIsOn% := 0;
                endif
                
                docase
                case laTrialFinalPage% = 2 and laSaccadeToBlank% = 1 then  'In the case of final-stage double-saccade experiment, we take down the stimulus
                    'Give hold reward on success, if requested
                    RewardSmall%(laPSmallRewardHoldTarg); 
                    
                    'Remove stimulus, will not yet allow saccade
                    SafeSampleKey("v");  'Updated logic, we will turn the stimulus to a blank page, rather than bring it down
                    
                    ChangeStateTo(stateWaitForFinalBlankUp%,tNow);
                    
                case laTrialFinalPage% = 2 and laFixDownAfterPage% = -1 and laTarget1Loc%[tc%] = 0 then    
                    'This is a no-go trial success!
                    
                    'No! No! No! Taking down the stimulus will get us stuck because stateSuccess% ALSO does it
                    ''Bring down stimulus
                    'SafeSampleKey("X");
                    ''And move to reward
                    'WaitForBlankTo(stateSuccess%, tNow);    
                    ChangeStateTo(stateSuccess%, tNow);
                    
                case laTrialFinalPage% = 2 then  'If final page is 2 and not saccadeToBlank, then we remove fixpt as saccade release
                    'Give hold reward on success, if requested
                    RewardSmall%(laPSmallRewardHoldTarg); 
                    
                    'Remove fixation point as saccade release
                    SafeSampleKey("f");
                    
                    if laDoMicroThisTrial% = 1 then
                        WaitForFixptOffTo(stateGiveMicrostim%,tNow);  'When waiting for microstim saccade, we have to allow for the eyes to go cattywompus
                    else
                        WaitForFixptOffTo(stateWaitSaccade1%,tNow);
                    endif
                    
                else
                    'Request Page 3 and wait for it to come up
                    SafeSampleKey("v");  'u will toggle to the next page
                    ChangeStateTo(stateWaitForPage3Up%, tNow);  
                endcase

            endif
        endif;
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    case iState% = stateWaitForPage3Up% then
        if stateBegin% = 1 then
            LogStatus("WaitForPage3Up", "Began waiting for Page 3 up at about " + str$(tNow));
            stateBegin% := 0;
        endif
        ' Fixation may be broken while waiting for Page 3 to come on. 
        if LookingFixation%(xEye,yEye) <= 0 then
            LogStatus("WaitForPage3Up", "Broken fixation at about " + str$(tNow));
            ChangeStateTo(stateAbort%, tNow);
        else
            ' Check if page has updated
            if View(DataWindow%).FindEdge%(PageToggleChannel%, tLast, tTrigger) > -1 then  'FindEdge returns 0 for a 0-->1 transition, and 1 for a 1-->0 transition, and we don't care which!
                LogStatus("WaitPage3Up", "Stimulus up (Page 3) at about " + str$(tNow));
                SampleText("Page 3 Up",tNow);
                'tStimOn := tTrigger;  'unused

                'Turn on opto if requested at this stage - if it's not on and it starts at this stage, GO!
                if laDoOptoThisTrial% = 1 and  optoIsOn% = 0 and optoOnState% = stateWaitThroughPage3% then
                    LogStatus("WaitPage3Up", "Request opto on at about " + str$(tNow));
                    SafeSampleKey("O");  'turn on opto
                    tOpt := View(DataWindow%).MaxTime();
                    printlog("OptoOn at %f\n",tOpt);
                    SampleText("OptoOn",tOpt);  'Sampletext is approximate, opto copy channel will have record of TTL pulse
                    optoIsOn% := 1;  'Prevent opto from being turned on again
                endif
                
                DrawTarget(1,3,tc%);
                
                if laTrialFinalPage% = 3 and laFixDownAfterPage% = -1 and laTarget1Loc%[tc%] > 0 then
                    'So if we're doing GNG and this is the last page, and the stimulus is a target,
                    'we do NOT take down fixation, saccade is now allowed (note: if stimulus is 
                    'non-target we will require fixation through Page 3)
                    ChangeStateTo(stateWaitSaccade1%, tTrigger);
                else
                    ChangeStateTo(stateWaitThroughPage3%, tTrigger);
                endif
                
            endif
        endif      
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    case iState% = stateWaitThroughPage3% then 
        if stateBegin% = 1 then
            LogStatus("WaitThroughPage3", "Began waiting through Page 3 at about " + str$(tNow));
            stateBegin% := 0;
        endif 
        ' Fixation may be broken while waiting through page 3 
        if LookingFixation%(xEye,yEye) <= 0 then
            'If this is a no-go trial and it is the final page, this is a FAILURE, not an abort
            if laTrialFinalPage% = 3 and laFixDownAfterPage% = -1 and laTarget1Loc%[tc%] = 0 then
                LogStatus("WaitThroughPage3", "Broken fixation (fail on no-go trial) at about " + str$(tNow));
                ChangeStateTo(stateFailure%, tNow);
            else  '
                LogStatus("WaitThroughPage3", "Broken fixation at about " + str$(tNow));
                ChangeStateTo(stateAbort%, tNow);
            endif
        else
            if (tNow - tStateStart >= laPage3Dur) then  'Page 3 done
                'Turn off opto if requested at this stage - if it's on and it stops at this stage, STOP!
                if laDoOptoThisTrial% = 1 and  optoIsOn% = 1 and optoOffState% = stateWaitThroughPage3% then
                    LogStatus("WaitThroughPage2", "Request opto off at about " + str$(tNow));
                    SafeSampleKey("o");  'turn off opto
                    tOpt := View(DataWindow%).MaxTime();
                    printlog("OptoOff at %f\n",tOpt);
                    SampleText("OptoOff",tOpt);  'Sampletext is approximate, opto copy channel will have record of TTL pulse
                    optoIsOn% := 0;
                endif
                
                docase
                case laSaccadeToBlank% = 1 then  'Any instance of a "page 4" is blank, and saccading to the blank after subsequent "f"
                    'Give hold reward on success, if requested
                    RewardSmall%(laPSmallRewardHoldTarg); 
                    
                    'Remove stimulus, will not yet allow saccade
                    SafeSampleKey("v");  'Updated logic, we will turn the stimulus to a blank page, rather than bring it down
                    
                    ChangeStateTo(stateWaitForFinalBlankUp%,tNow);
                    
                case laTrialFinalPage% = 3 and laFixDownAfterPage% = -1 and laTarget1Loc%[tc%] = 0 then    
                    'This is a no-go trial success!
                
                    'No! No! No! Taking down the stimulus will get us stuck because stateSuccess% ALSO does it
                    ''Bring down stimulus
                    'SafeSampleKey("X");
                    ''And move to reward
                    'WaitForBlankTo(stateSuccess%, tNow);    
                    ChangeStateTo(stateSuccess%, tNow); 
                
                else
                    'Remove fixpt, and allow saccade
                    SafeSampleKey("f");
                    WaitForFixptOffTo(stateWaitSaccade1%, tNow);  
                endcase

            endif
        endif;    
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    case iState% = stateWaitForFinalBlankUp% then
        if stateBegin% = 1 then
            LogStatus("WaitForFinalBlankUp", "Began waiting for final blank up at about " + str$(tNow));
            stateBegin% := 0;
        endif
        ' Fixation may be broken while waiting for Final Blank page to come on. 
        if LookingFixation%(xEye,yEye) <= 0 then
            LogStatus("WaitForFinalBlankUp", "Broken fixation at about " + str$(tNow));
            ChangeStateTo(stateAbort%, tNow);
        else
            ' Check if page has updated
            if View(DataWindow%).FindEdge%(PageToggleChannel%, tLast, tTrigger) > -1 then  'FindEdge returns 0 for a 0-->1 transition, and 1 for a 1-->0 transition, and we don't care which!
                LogStatus("WaitFinalBlankPageUp", "Stimulus up (Final Blank Page) at about " + str$(tNow));
                SampleText("Final Blank Page Up",tNow);
                'tStimOn := tTrigger;  'unused

                'Turn on opto if requested at this stage - if it's not on and it starts at this stage, GO!
                if laDoOptoThisTrial% = 1 and  optoIsOn% = 0 and optoOnState% = stateWaitForSaccadeRelease% then
                    LogStatus("WaitFinalBlankPageUp", "Request opto on at about " + str$(tNow));
                    SafeSampleKey("O");  'turn on opto
                    tOpt := View(DataWindow%).MaxTime();
                    printlog("OptoOn at %f\n",tOpt);
                    SampleText("OptoOn",tOpt);  'Sampletext is approximate, opto copy channel will have record of TTL pulse
                    optoIsOn% := 1;  'Prevent opto from being turned on again
                endif
                
                DrawTarget(0,0,0);
                
                ChangeStateTo(stateWaitForSaccadeRelease%, tTrigger);
            endif
        endif 
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    case iState% = stateWaitForSaccadeRelease% then
        if stateBegin% = 1 then
            LogStatus("WaitForSaccadeRelease", "Began waiting for saccade release at about " + str$(tNow));
            stateBegin% := 0;
        endif
        ' Fixation may be broken while waiting for saccade release
        if LookingFixation%(xEye,yEye) <= 0 then
            LogStatus("WaitForSaccadeRelease", "Broken fixation at about " + str$(tNow));
            ChangeStateTo(stateAbort%, tNow);
        else
            if (tNow - tStateStart >= laSaccadeReleaseDelay) then  'Wait done
                'Turn off opto if requested at this stage - if it's on and it stops at this stage, STOP!
                if laDoOptoThisTrial% = 1 and  optoIsOn% = 1 and optoOffState% = stateWaitForSaccadeRelease% then
                    LogStatus("WaitForSaccadeRelease", "Request opto off at about " + str$(tNow));
                    SafeSampleKey("o");  'turn off opto
                    tOpt := View(DataWindow%).MaxTime();
                    printlog("OptoOff at %f\n",tOpt);
                    SampleText("OptoOff",tOpt);  'Sampletext is approximate, opto copy channel will have record of TTL pulse
                    optoIsOn% := 0;
                endif
                                
                'Remove fixpt, and allow saccade
                SafeSampleKey("f");
                if laDoMicroThisTrial% = 1 then
                    WaitForFixptOffTo(stateGiveMicrostim%, tNow); 
                else
                    WaitForFixptOffTo(stateWaitSaccade1%, tNow);
                endif
                
            endif
        endif; 
        

        'TODO Code for some eye-trace stuff, haven't looked hard at it, not sure we'll use it, but not deleting until I know I don't need anything like this
        'iStarPosColor% := GetEyeTraceColor%(starTargetOrder%[iTargetPoint%]);
        'iStarPosChannel% := View(StarWindow%).XYSetChan(0, 0, 0, 1, iStarPosColor%);
        'if iStarPosChannel% > 0 then
        '    View(StarWindow%).XYDrawMode(iStarPosChannel%, 1, 0);
        '    View(StarWindow%).XYDrawMode(iStarPosChannel%, 2, 0);
        'endif          
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    case iState% = stateWaitSaccade1% then
        if stateBegin% = 1 then
            'Turn on opto if requested at this stage - if it's not on and it starts at this stage, GO!
            if laDoOptoThisTrial% = 1 and  optoIsOn% = 0 and optoOnState% = stateWaitSaccade1% then
                LogStatus("WaitSaccade1", "Request opto on at about " + str$(tNow));
                SafeSampleKey("O");  'turn on opto
                tOpt := View(DataWindow%).MaxTime();
                printlog("OptoOn at %f\n",tOpt);
                SampleText("OptoOn",tOpt);  'Sampletext is approximate, opto copy channel will have record of TTL pulse
                optoIsOn% := 1;  'Prevent opto from being turned on again
            endif
            LogStatus("WaitSaccade1", "Ready for Saccade 1 at about " + str$(tNow));
            SampleText("Waiting for Saccade 1",tNow);
            stateBegin% := 0;
        endif
        
        'Note that no matter what we will turn off opto before leaving this state.  Opto is done at this point in the expt.
        
        looking% := LookingTarget1%(xEye,yEye,tc%);
        if looking% > 0 then   'if looking at any present S1 target, "saccade" has happened 
            
            'Turn off opto if requested at this stage - if it's on and it stops at this stage, STOP!
            'Actually, if opto is on at this point, TURN IT OFF.  This does cover the case of the GNG experiment
            'where opto during the S2 is allowed, as well
            if laDoOptoThisTrial% = 1 and  optoIsOn% = 1 then 'and optoOffState% = stateWaitSaccade1% then
                LogStatus("Saccade1Done", "Request opto off at about " + str$(tNow));
                SafeSampleKey("o");  'turn off opto
                tOpt := View(DataWindow%).MaxTime();
                printlog("OptoOff at %f\n",tOpt);
                SampleText("OptoOff",tOpt);  'Sampletext is approximate, opto copy channel will have record of TTL pulse
                optoIsOn% := 0;
            endif
            
            if looking% = laTarget1Loc%[tc%] then  'potential hit, have to hold
                LogStatus("WaitSaccade1", "Entered target answer window at about " + str$(tNow));
                SampleText("Saccade 1 Target Window Entered at about",tNow); 
                ChangeStateTo(stateHoldSaccade1%, tNow);
            else
                'this is looking at the wrong target, a miss, do not require hold time
                LogStatus("WaitSaccade1", "Entered nontarget answer window at about " + str$(tNow));
                SampleText("Nontarget Window Entered at about",tNow); 
                ChangeStateTo(stateFailure%, tNow);
            endif

        else
            
            'Midstream opto off not currently envisioned            
            '            'Turn off opto mid stream, if required
            '            if tNow - tStateStart >= starOptoOffMidStimTime  and optoIsOn% = 1 then
            '                LogStatus("WaitForAnswer", "Turning off laser at " + str$(tNow));
            '                'do not change state
            '                'turn off opto
            '                SafeSampleKey("o");  'turn it off
            '                tOpt := View(DataWindow%).MaxTime();
            '                'printlog("OptoOff at %f\n",tOpt);
            '                SampleText("OptoOff",tOpt);
            '                optoIsOn% := 0;
            '            endif;           
            
            if tNow - tStateStart >= laSacc1AcqTime then  'if saccade fails
                
                'Turn off opto if requested at this stage - if it's on and it stops at this stage, STOP!
                'Actually, if opto is on at this point, TURN IT OFF
                if laDoOptoThisTrial% = 1 and  optoIsOn% = 1 then 'and optoOffState% = stateWaitSaccade1% then
                    LogStatus("Saccade1Fail", "Request opto off at about " + str$(tNow));
                    SafeSampleKey("o");  'turn off opto
                    tOpt := View(DataWindow%).MaxTime();
                    printlog("OptoOff at %f\n",tOpt);
                    SampleText("OptoOff",tOpt);  'Sampletext is approximate, opto copy channel will have record of TTL pulse
                    optoIsOn% := 0;
                endif
                
                LogStatus("WaitForSaccade1", "Saccade 1 Timeout Fail at " + str$(tNow));
                SampleText("Saccade 1 Timeout",tNow);
                ChangeStateTo(stateFailure%, tNow);
                
            endif
            
        endif
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    case iState% = stateHoldSaccade1% then
        if stateBegin% = 1 then
            LogStatus("HoldSaccade1", "Target 1 acquired, waiting for hold at about " + str$(tNow));
            stateBegin% := 0;
        endif
        'Re-check looking%
        looking% := LookingTarget1%(xEye,yEye,tc%);
        docase
        case looking% = laTarget1Loc%[tc%] and tNow > tStateStart+laSacc1HoldTime then  'held through entire time for saccade 1
            LogStatus("HoldSaccade1", "Target 1 fully held at about " + str$(tNow));
            SampleText("Saccade 1 Success",tNow);
            
            'Give hold reward on success, if requested
            RewardSmall%(laPSmallRewardSaccade1);
            
            if laDoTwoSaccades% = 1 then  'move to second saccade
                if laFixDownAfterPage% < laTrialFinalPage% then  'If fixation is down but there are more pages to play, go to next page
                    'Logic is a bit complicated with all the possbilities but currently this ONLY goes to page 2 so we don't have to check expt/training stage
                    if laFixDownAfterPage% = 1 then
                        SafeSampleKey("v");  'Request page 2
                        ChangeStateTo(stateWaitForPage2Up%,tNow);
                    else
                        'Sanity check, if this triggers we should find it in testing
                        Message("After Saccade 1, laFixDownAfterPage was expected\n to be 1, but was " + Str$(laFixDownAfterPage%) + ", quitting!");
                        Stop%();
                    endif                    
                else 'fixation is down and there are no more pages to play
                    'Under current logic, we are now released to do the second saccade (first saccade hold needs to be short, but it is the only thing, there is no release signal!)
                    ChangeStateTo(stateWaitSaccade2%,tNow);
                    tSaccadeStart := 0;
                endif
                
            else  'success!
                ChangeStateTo(stateSuccess%, tNow);
            endif   
        case looking% <> laTarget1Loc%[tc%] then  'broke fixation on target 1 early
            LogStatus("HoldSaccade1", "Target 1 hold broken at about " + str$(tNow));
            ChangeStateTo(stateFailure%, tNow);
        endcase

    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    case iState% = stateWaitSaccade2% then
        if stateBegin% = 1 then
            'No more opportunity for opto
            LogStatus("WaitSaccade2", "Ready for Saccade 2 at about " + str$(tNow));
            SampleText("Waiting for Saccade 2",tNow);
            stateBegin% := 0;
        endif
        
        if laDoOptoThisTrial% = 1 then
            looking% := LookingTarget2JAWS%(xEye,yEye,tc%);
        else
            looking% := LookingTarget2%(xEye,yEye,tc%);
        endif
        docase
        case looking% = 1 then  'Gaze has not left first target
            if tNow - tStateStart >= laSacc1AcqTime then  'if saccade fails
                LogStatus("WaitForSaccade2", "Saccade 2 Timeout Fail at " + str$(tNow));
                SampleText("Saccade 2 Timeout",tNow);
                ChangeStateTo(stateFailure%, tNow);
            endif
        case looking% = 0 and tSaccadeStart = 0 then 'first time we notice gaze has left Targ 1, allow an extra ~300 ms (saccadeMaxDur) to find target  
            tSaccadeStart := tNow;
            LogStatus("WaitForSaccade2", "Gaze left Target 1 before " + str$(tNow) + " but no target acquired yet");
            'Stay in this state
        case looking% = 0 and tSaccadeStart > 0 then 'gaze already left Targ 1 and the very short "saccade clock" is ticking
            if tNow - tStateStart >= saccadeMaxDur then  'if saccade fails
                LogStatus("WaitForSaccade2", "Saccade 2 Timeout Fail at " + str$(tNow));
                SampleText("Saccade 2 Timeout",tNow);
                ChangeStateTo(stateFailure%, tNow);
            endif
        case looking% > 1 then   'a saccade has happened to a target
            if looking% = laTarget2Loc%[tc%] then  'potential hit, have to hold
                LogStatus("WaitSaccade2", "Entered target answer window at about " + str$(tNow));
                SampleText("Saccade 2 Target Window Entered at about",tNow); 
                ChangeStateTo(stateHoldSaccade2%, tNow);
            else
                'this is looking at the wrong target, a miss, do not require hold time
                LogStatus("WaitSaccade2", "Entered nontarget answer window at about " + str$(tNow));
                SampleText("Nontarget Window Entered at about",tNow); 
                ChangeStateTo(stateFailure%, tNow);
            endif            
        endcase  
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    case iState% = stateHoldSaccade2% then
        if stateBegin% = 1 then
            LogStatus("HoldSaccade2", "Target 2 acquired, waiting for hold at about " + str$(tNow));
            stateBegin% := 0;
        endif
        'Re-check looking%
        if laDoOptoThisTrial% = 1 then
            looking% := LookingTarget2JAWS%(xEye,yEye,tc%);
        else
            looking% := LookingTarget2%(xEye,yEye,tc%);
        endif
        docase
        case looking% = laTarget2Loc%[tc%] and tNow > tStateStart+laSacc2HoldTime then  'held through entire time for saccade 1
            LogStatus("HoldSaccade2", "Target 2 fully held at about " + str$(tNow));
            SampleText("Saccade 2 Success",tNow);
            ChangeStateTo(stateSuccess%, tNow);
        case looking% <> laTarget2Loc%[tc%] then  'broke fixation on target 2 early
            LogStatus("HoldSaccade2", "Target 2 hold broken at about " + str$(tNow));
            ChangeStateTo(stateFailure%, tNow);
        endcase
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    case iState% = stateGiveMicrostim% then    
        'TODO - here we have to actually give the microstimulation
        'We will get to this state immediately after verification 
        'that the fixation point has come down, regardless of where
        'in the page structure we are (i.e. page 1 or page 2, based
        'on training step).  Note that if we do NOT give microstim 
        'on a particular trial we will simply wait for Saccade 1,
        'which is correct.
        
        'Right now this state will just advance to the next state so AlwaysLooking testing is possible
        if stateBegin% = 1 then
            'LogStatus("Give Microstim", "Deliver microstim at about " + str$(tNow));
            LogStatus("Give Microstim", "PLACEHOLDER -- Deliver microstim at about " + str$(tNow));
            stateBegin% := 0;
        endif
        
        
        'Give the microstim!  No idea how the hardware will work for now
        
        ChangeStateTo(stateWaitSaccadeMicro%, tNow);  'TODO - Is it possible we just go to WaitSaccade1 here????
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    case iState% = stateWaitSaccadeMicro% then
        'TODO - the logic of this one is also a bit fuzzy
        'Leave the logic to be worked out when the hardware 
        'exists.  Perhaps it's no different than Saccade 1
        
        'Right now this state will just advance to the next state so AlwaysLooking testing is possible
        if stateBegin% = 1 then
            'LogStatus("Wait Microstim Saccade", "Microstim saccade at about " + str$(tNow));
            LogStatus("Wait Microstim Saccade", "PLACEHOLDER -- Microstim saccade at about " + str$(tNow));
            stateBegin% := 0;
        endif
        
        
        ChangeStateTo(stateWaitSaccade1%, tNow);
        
        'The JAWS issue is that we can't rely on the saccade
        'to be correct!  We have to randomly reward the
        'animal, but at what time we do that is not clear.
        'We might need to monitor for "any saccade", or at
        'least "any saccade" in the right direction.  
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    case iState% = stateSuccess% then
        'This should not happen, but can't be too careful!  Make sure opto is off!
        if optoIsOn% = 1 then
            LogStatus("StateSuccess", "OPTO STILL ON!  Request opto off at about " + str$(tNow));
            SafeSampleKey("o");  'turn off opto
            tOpt := View(DataWindow%).MaxTime();
            printlog("OptoOff at %f\n",tOpt);
            SampleText("OptoOff",tOpt);  'Sampletext is approximate, opto copy channel will have record of TTL pulse
            optoIsOn% := 0;
            message("WARNING - opto was still on at stateSuccess%!  This should NOT happen!\n  There is a coding issue, please discontinue experiment and tell Jeff!");
        endif;
        
        'Do this after opto check, because if opto is somehow on we want it off ASAP
        LogStatus("StateSuccess", "Trial Success, entered StateSuccess at about " + str$(tNow));

        'Note trial success and recalculate pctSuccess
        nTrialsSuccess% += 1;
        if laDoOptoThisTrial% = 1 then
            nTrialsSuccessJAWS% += 1;
        else
            nTrialsSuccessNoJAWS% += 1;
        endif
        if (nTrialsStartedJAWS%-nTrialsAbortJAWS%) > 0 then
            pctSuccessJAWS := round(nTrialsSuccessJAWS%)/round(nTrialsStartedJAWS%-nTrialsAbortJAWS%);  'ROUND() is an undocumented floating-point math trick!
        endif
        if (nTrialsStartedNoJAWS%-nTrialsAbortNoJAWS%) > 0 then
            pctSuccessNoJAWS := round(nTrialsSuccessNoJAWS%)/round(nTrialsStartedNoJAWS%-nTrialsAbortNoJAWS%);
        endif
    
        SafeSampleKey("X");
        Yield();
        
        'For now we are not doing a separate state for Reward
        'Reward on JAWS trials needs to be contingent
        'Here, we are in the "success" state, but it's possible that the window is too big and we don't want to
        'give "too easy" reward
        if laDoOptoThisTrial% = 1 then
            'First, determine what our reward probability should be
            jtc% := nTrialsStartedNoJAWS%-nTrialsAbortNoJAWS%;  'Total completed JAWS trials
            if jtc% < 40 then
                'using 40 trial window to blend laPJawsRewardInit with actual success on No-JAWS trials
                laPJawsReward := (laPJawsRewardInit*round(40-jtc%)/40) + (pctSuccessNoJAWS*round(jtc%/40));  
            else
                'After 40 trial window, just use actual No-JAWS success rate
                laPJawsReward := pctSuccessNoJAWS;
            endif
            'Now we want to reward if JAWS success is less than No-JAWS, but randomly not-reward if JAWS success is too high
            if pctSuccessJAWS < laPJawsReward then
                SampleText("Trial " + Str$(tc%+1) + " Success, giving reward!");
                DefaultReward%();
            else
                if (laPJawsReward/pctSuccessJAWS) >= Rand() then
                    SampleText("Trial " + Str$(tc%+1) + " Success, giving reward!");
                    DefaultReward%();
                else
                    SampleText("Trial " + Str$(tc%+1) + " Success, no reward (window may be too large)!");
                endif
            endif            
        else
            SampleText("Trial " + Str$(tc%+1) + " Success, giving reward!");
            DefaultReward%();  'On regular trials, reward
        endif
        
        WaitForBlankTo(stateAdvance%, tNow); 
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    case iState% = stateFailure% then
        'This should not happen, but can't be too careful!  Make sure opto is off!
        if optoIsOn% = 1 then
            LogStatus("StateFailure", "OPTO STILL ON!  Request opto off at about " + str$(tNow));
            SafeSampleKey("o");  'turn off opto
            tOpt := View(DataWindow%).MaxTime();
            printlog("OptoOff at %f\n",tOpt);
            SampleText("OptoOff",tOpt);  'Sampletext is approximate, opto copy channel will have record of TTL pulse
            optoIsOn% := 0;
            message("WARNING - opto was still on at stateFailure%!  This should NOT happen!\n  There is a coding issue, please discontinue experiment and tell Jeff!");
        endif;
        
        'Do this after opto check, because if opto is somehow on we want it off ASAP
        LogStatus("StateFailure", "Trial Failure, entered StateFailure at about " + str$(tNow));
        
        'Note trial failure and recalculate pctSuccess (nTrialsStarted has changed)
        nTrialsFail% += 1;
        if laDoOptoThisTrial% = 1 then
            nTrialsFailJAWS% += 1;
        else
            nTrialsFailNoJAWS% += 1;
        endif
        if (nTrialsStartedJAWS%-nTrialsAbortJAWS%) > 0 then
            pctSuccessJAWS := round(nTrialsSuccessJAWS%)/round(nTrialsStartedJAWS%-nTrialsAbortJAWS%);  'ROUND() is an undocumented floating-point math trick!
        endif
        if (nTrialsStartedNoJAWS%-nTrialsAbortNoJAWS%) > 0 then
            pctSuccessNoJAWS := round(nTrialsSuccessNoJAWS%)/round(nTrialsStartedNoJAWS%-nTrialsAbortNoJAWS%);
        endif
        
        'For the moment, I don't think we should try to implement any sort of reward-on-failure for JAWS trials, 
        'but this will obviously be up for discussion when we get around to the double-saccade task, particularly 
        'if failure rate on JAWS trials is very high, but the animal IS saccading somewhere (just not where we
        'expected).
        
        SampleText("Trial " + Str$(tc%+1) + " Failure");

        SafeSampleKey("X");
        WaitForBlankTo(stateAdvance%, tNow); 
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
         
    case iState% = stateAbort% then
        'There are multiple places that can lead to an abort with opto laser still on, turn this off FIRST
        if optoIsOn% = 1 then
            'turn off opto
            SafeSampleKey("o");  'turn it off
            tOpt := View(DataWindow%).MaxTime();
            printlog("OptoOff at %f\n",tOpt);
            SampleText("OptoOff",tOpt);  'Sampletext is approximate, opto copy channel will have record of TTL pulse
            optoIsOn% := 0;
        endif;
        
        'Do this after opto check, because if opto is somehow on we want it off ASAP
        LogStatus("StateAbort", "Trial Abort, entered StateAbort at about " + str$(tNow));
        
        'Note trial abort; do not recalculate pctSuccess as it doesn't change on an abort
        nTrialsAbort% += 1;
        if laDoOptoThisTrial% = 1 then
            nTrialsAbortJAWS% += 1;
        else
            nTrialsAbortNoJAWS% += 1;
        endif
        'isAbort% := 1;  'Unused
        
        SampleText("Trial " + Str$(tc%+1) + " Abort");
    
        tc% -= 1; 'Decrement trial count, will repeat trial
    
        SafeSampleKey("X");   'Request all stimuli down
        
        WaitForBlankTo(stateAbortPenalty%, tNow);
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    case iState% = stateAbortPenalty% then 
        if stateBegin% = 1 then 
            LogStatus("StateAbort Penalty", "Abort Penalty begun at about " + str$(tNow));
            stateBegin% := 0;
        endif
        
        if (tNow - tStateStart >= laAbortPenaltyTime) then
            ChangeStateTo(stateITI%, tNow);  'don't go to reward
        endif;       
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    case iState% = stateAdvance% then    
        'Check to see if we are done!
        if tc%+1 >= nTrials% then  'If we have completed the final trial, don't bother advancing, just quit
            UpdateToolbarText();  'If we are quitting we need to update this first
            LogStatus("Advance", "Completed last trial at about " + str$(tNow) + ", quitting!");
            Stop%();
        else
            SafeSampleKey("a");
            LogStatus("Advance", "Requesting advance at about " + str$(tNow));
            ChangeStateTo(stateCheckAdvance%,tNow);
        endif
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    case iState% = stateCheckAdvance% then
        'Checking that previously-requested advance has occurred
        if stateBegin% = 1 then
            LogStatus("CheckAdvance", "Checking that advance has occured at about " + str$(tNow));
            stateBegin% := 0;
        endif
        
        'The Advance channel will toggle, we don't care whether the edge is up or down
        if FindEdge%(AdvanceChannel%, tLastAdvance+tic, tAdvance) > -1 then
            LogStatus("CheckAdvance", "Advance occured at exactly " + str$(tAdvance));
            SampleText("Stimulus Advanced",tAdvance);
            ChangeStateTo(stateITI%,tStateStart);  'We don't want to count the advance time against the ITI
            tLastAdvance := tAdvance;
        endif        
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    case iState% = stateITI% then
        'Waiting for ITI to end
        if stateBegin% = 1 then
            stateBegin% := 0;
            LogStatus("WaitThrough ITI", "Began waiting through ITI at about " + str$(tNow));
            UpdateToolbarText();  'This is relatively simplistic but that should be OK
        endif
        
        if (tNow - tStateStart >= laInterTrialTime) then
            ChangeStateTo(stateStartTrial%, tNow);
        endif;
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    'Special case - can only get here using WaitForBlankTo(), which specifies the next state to go to
    case iState% = stateWaitForBlank% then  
        'Waiting for screen blank
        if stateBegin% = 1 then
            stateBegin% := 0;
            tLast := tStateStart;  'This may not make a big difference, actually
            LogStatus("WaitForBlank", "Began waiting for blank screen at about " + str$(tNow));
        endif
    
        'Need to check for either Stim or Fixpoint down because it is possible to break fixation before the Stim is up!
        if View(DataWindow%).FindFallingEdge%(StimChannel%, tLast, tTrigger) = 1 or View(DataWindow%).FindFallingEdge%(FixPointChannel%, tLast, tTrigger) = 1 then
            'Stimulus is down
            'tLastTrigger := tTrigger;  'unused
            LogStatus("WaitForBlank", "Blank screen at exactly " + str$(tTrigger));
            SampleText("Screen Blank",tTrigger);
            DrawTarget(0,0,0);  'Remove targets, second and third arguments are ignored
            DrawFix(0);
            ChangeStateTo(nextState%,tTrigger);  'It doesn't really matter which time we use here, none of the states following the "X" depend crucially on knowing the time of any previous action
        endif        
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    'Special case - can only get here using WaitForFixptOffTo(), which specifies the next state to go to
    case iState% = stateWaitForFixptOff% then  
        'Waiting for fixpt off
        if stateBegin% = 1 then
            tLast := tStateStart;  'This may not make a big difference, actually
            LogStatus("WaitForFixptOff", "Began waiting for fixpt off at about " + str$(tNow));
            stateBegin% := 0;
        endif
        
        if View(DataWindow%).FindFallingEdge%(FixPointChannel%, tLast, tTrigger) = 1 then
            'Fixpt is off
            'tLastTrigger := tTrigger;  'unused
            LogStatus("WaitForFixptOff", "Fixpt down at exactly " + str$(tTrigger));
            SampleText("Fixpt Down",tTrigger);
            DrawFix(0);
            ChangeStateTo(nextState%,tTrigger);   'The fixation point going down is the start point here
        endif        
        
    '----////----\\\\----////----\\\\----////----\\\\--State Break!!--////----\\\\----////----\\\\----////----\\\\
        
    else 
        
        'Unknown state!
        'This should never happen, but it is BAD
        
        'First thing turn off the opto if it is on
        if optoIsOn% = 1 then
            'turn off opto
            SafeSampleKey("o");  'turn it off
            tOpt := View(DataWindow%).MaxTime();
            printlog("OptoOff at %f\n",tOpt);
            SampleText("OptoOff",tOpt);
            optoIsOn% := 0;
        endif;
        
        'If the eyetracker is recording an output file, stop recording and close the file
        if RecordEyeTrackerOutputFile% = 1 then
            SafeSampleKey("w");  'Stop recording
            yield(0.1);
            SafeSampleKey("i");  'Close the file
            SafeSampleKey("Z");  'zero the DIGLOWs
        endif
        
        'Then put up a message indicating the issue
        Message("Unknown state (Value is " + str$(iState%) + "), Quitting!");
        Stop%();
        
    endcase;
    
    
    
    tLast := tNow;
	
	return iStatus%;
    
end;



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc ChangeStateTo(stateTo%, tStart)
	iState% := stateTo%;
    if iState% = stateWaitForBlank% then  'this is not allowed and is a coding error, must use WaitForBlankTo()
        message("Coding error - disallowed ChangeStateTo(stateWaitForBlank%,...)!  Quitting!");
        halt;  'Coding error, this won't happen live, we'll catch it in testing if we accidentally do it 
    endif
    stateBegin% := 1;  'Reset for next state
	if tStart > 0 then 
        tStateStart := tStart; 
    endif;
end;



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'WaitForBlankTo() - this is essentially the same as ChangeStateTo(), except it goes to an intermediate
'state which waits for a screen blank and THEN goes to the specified state.  stateWaitForBlank is an unusual
'state in that it can be called in a lot of contexts, which justifies an easier way of keeping track of
'which state we want to go to next
proc WaitForBlankTo(stateTo%, tStart)
	nextState% := stateTo%;
    stateBegin% := 1;  'Reset for next state
    iState% := stateWaitForBlank%;
	if tStart > 0 then 
        tStateStart := tStart; 
    endif;
end;


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'WaitForFixptOffTo() - this is essentially the same as ChangeStateTo(), except it goes to an intermediate
'state which waits for fixpt down and THEN goes to the specified state.  stateWaitForFixptOff is an unusual
'state in that it can be called in a lot of contexts, which justifies an easier way of keeping track of
'which state we want to go to next
proc WaitForFixptOffTo(stateTo%, tStart)
	nextState% := stateTo%;
    stateBegin% := 1;  'Reset for next state
    iState% := stateWaitForFixptOff%;
	if tStart > 0 then 
        tStateStart := tStart; 
    endif;
end;





proc GetLookAwayExperimentType()
	var stmp$;
	var key$;
	key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Scripts\\LookAway";
    
    laExperimentType% := GetIntRegistryValue%(key$, "ExperimentType", laExperimentType%);
    laTrainingStageSSGNG% := GetIntRegistryValue%(key$, "TrainingStageSSGNG", laTrainingStageSSGNG%);
    laTrainingStageSSMicro% := GetIntRegistryValue%(key$, "TrainingStageSSMicro", laTrainingStageSSMicro%);
    laTrainingStageDS2S1% := GetIntRegistryValue%(key$, "TrainingStageDS2S1", laTrainingStageDS2S1%);
    laTrainingStageDS2S2% := GetIntRegistryValue%(key$, "TrainingStageDS2S2", laTrainingStageDS2S2%);
    
end;

proc SaveLookAwayExperimentType()
	var key$;
	var stmp$;
	key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Scripts\\LookAway";
    
    SetIntRegistryValue(key$, "ExperimentType", laExperimentType%);
    SetIntRegistryValue(key$, "TrainingStageSSGNG", laTrainingStageSSGNG%);
    SetIntRegistryValue(key$, "TrainingStageSSMicro", laTrainingStageSSMicro%);
    SetIntRegistryValue(key$, "TrainingStageDS2S1", laTrainingStageDS2S1%);
    SetIntRegistryValue(key$, "TrainingStageDS2S2", laTrainingStageDS2S2%);
    
end;    


'This PROC is different than the standard version; it takes an input value so that separate parameters can
'be held for separate experiments (Note that all *variables* are actually the same variables in all cases)
proc GetLookAwayParameters(expt$)
	var stmp$;
	var key$;
	key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Scripts\\LookAway\\" + expt$;
    
    laAlwaysLooking% := GetIntRegistryValue%(key$, "AlwaysLooking", laAlwaysLooking%);
    'laTrainingStage% := GetIntRegistryValue%(key$, "TrainingStage", laTrainingStage%);
    laNRepeats% := GetIntRegistryValue%(key$, "NRepeats", laNRepeats%);
    laNRepeatsLoc1ToJF% := GetIntRegistryValue%(key$, "NRepeatsLoc1ToJF", laNRepeatsLoc1ToJF%);
    laNRepeatsLoc1AwayJF% := GetIntRegistryValue%(key$, "NRepeatsLoc1AwayJF", laNRepeatsLoc1AwayJF%);
    laNRepeatsUseJAWS% := GetIntRegistryValue%(key$, "NRepeatsUseJAWS", laNRepeatsUseJAWS%);
    laNRepeatsNoJAWS% := GetIntRegistryValue%(key$, "NRepeatsNoJAWS", laNRepeatsNoJAWS%);    
    laNRepeatsLoc1Only% := GetIntRegistryValue%(key$, "NRepeatsLoc1Only", laNRepeatsLoc1Only%);
    laNRepeatsLoc1Loc2% := GetIntRegistryValue%(key$, "NRepeatsLoc1Loc2", laNRepeatsLoc1Loc2%);
    'laInvertMirroredTrials% := GetIntRegistryValue%(key$, "InvertMirroredTrials", laInvertMirroredTrials%);
    
    laAnswerWindowDiameter := GetFloatRegistryValue(key$, "AnswerWindowDiameter", laAnswerWindowDiameter);
    laContrastFade% := GetIntRegistryValue%(key$, "ContrastFade", laContrastFade%);
    laLoc1bXDeg := GetFloatRegistryValue(key$, "Loc1bXDeg", laLoc1bXDeg);
    laLoc1bYDeg := GetFloatRegistryValue(key$, "Loc1bYDeg", laLoc1bYDeg);
    laLoc2aXDeg := GetFloatRegistryValue(key$, "Loc2aXDeg", laLoc2aXDeg);
    laLoc2aYDeg := GetFloatRegistryValue(key$, "Loc2aYDeg", laLoc2aYDeg);
    laLoc2bXDeg := GetFloatRegistryValue(key$, "Loc2bXDeg", laLoc2bXDeg);
    laLoc2bYDeg := GetFloatRegistryValue(key$, "Loc2bYDeg", laLoc2bYDeg);    
    
    laFixAcquisitionTime := GetFloatRegistryValue(key$, "FixAcquisitionTime", laFixAcquisitionTime);
    laFixationDurationMin := GetFloatRegistryValue(key$, "FixationDurationMin", laFixationDurationMin);
    laFixationDurationVar := GetFloatRegistryValue(key$, "FixationDurationVar", laFixationDurationVar);
    laPage1DurationMin := GetFloatRegistryValue(key$, "Page1DurationMin", laPage1DurationMin);
    laPage1DurationVar := GetFloatRegistryValue(key$, "Page1DurationVar", laPage1DurationVar);
    laPage2DurationMin := GetFloatRegistryValue(key$, "Page2DurationMin", laPage2DurationMin);
    laPage2DurationVar := GetFloatRegistryValue(key$, "Page2DurationVar", laPage2DurationVar);
    laPage3DurationMin := GetFloatRegistryValue(key$, "Page3DurationMin", laPage3DurationMin);
    laPage3DurationVar := GetFloatRegistryValue(key$, "Page3DurationVar", laPage3DurationVar);
    laSaccadeReleaseDelayMin := GetFloatRegistryValue(key$, "SaccadeReleaseDelayMin", laSaccadeReleaseDelayMin);
    laSaccadeReleaseDelayVar := GetFloatRegistryValue(key$, "SaccadeReleaseDelayVar", laSaccadeReleaseDelayVar);
    laSacc1AcqTime := GetFloatRegistryValue(key$, "Sacc1AcqTime", laSacc1AcqTime);
    laSacc1HoldTime := GetFloatRegistryValue(key$, "Sacc1HoldTime", laSacc1HoldTime);
    laSacc2AcqTime := GetFloatRegistryValue(key$, "Sacc2AcqTime", laSacc2AcqTime);
    laSacc2HoldTime := GetFloatRegistryValue(key$, "Sacc2HoldTime", laSacc2HoldTime);
    laInterTrialTime := GetFloatRegistryValue(key$, "InterTrialTime", laInterTrialTime);
    laAbortPenaltyTime := GetFloatRegistryValue(key$, "AbortPenaltyTime", laAbortPenaltyTime);
    
    laOptoStartStage% := GetIntRegistryValue%(key$, "OptoStartStage", laOptoStartStage%);
    laOptoEndStage% := GetIntRegistryValue%(key$, "OptoEndStage", laOptoEndStage%);
    laOptoVoltageOut := GetFloatRegistryValue(key$, "OptoVoltageOut", laOptoVoltageOut);
    
    laMSPerSmallRewardHit% := GetIntRegistryValue%(key$, "MSPerSmallRewardHit", laMSPerSmallRewardHit%);
    laPSmallRewardHoldTarg := GetFloatRegistryValue(key$, "PSmallRewardHoldTarg", laPSmallRewardHoldTarg);
    laPSmallRewardSaccade1 := GetFloatRegistryValue(key$, "PSmallRewardSaccade1", laPSmallRewardSaccade1);
    laPJawsRewardInit := GetFloatRegistryValue(key$, "PJawsRewardInit", laPJawsRewardInit);    
    
    'This is hardcoded
    'laHitsPerSmallReward% := GetIntRegistryValue%(key$, "HitsPerSmallReward", laHitsPerSmallReward%);    
    
end;


'This PROC is different than the standard version; it takes an input value so that separate parameters can
'be held for separate experiments (Note that all *variables* are actually the same variables in all cases)
proc SaveLookAwayParameters(expt$)
	var key$;
	var stmp$;
	key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Scripts\\LookAway\\" + expt$;
    
    SetIntRegistryValue(key$, "AlwaysLooking", laAlwaysLooking%);
    'SetIntRegistryValue(key$, "TrainingStage", laTrainingStage%);
    SetIntRegistryValue(key$, "NRepeats", laNRepeats%);
    SetIntRegistryValue(key$, "NRepeatsLoc1ToJF", laNRepeatsLoc1ToJF%);
    SetIntRegistryValue(key$, "NRepeatsLoc1AwayJF", laNRepeatsLoc1AwayJF%);
    SetIntRegistryValue(key$, "NRepeatsUseJAWS", laNRepeatsUseJAWS%);
    SetIntRegistryValue(key$, "NRepeatsNoJAWS", laNRepeatsNoJAWS%);    
    SetIntRegistryValue(key$, "NRepeatsLoc1Only", laNRepeatsLoc1Only%);
    SetIntRegistryValue(key$, "NRepeatsLoc1Loc2", laNRepeatsLoc1Loc2%);
    'SetIntRegistryValue(key$, "InvertMirroredTrials", laInvertMirroredTrials%);
    
    SetFloatRegistryValue(key$, "AnswerWindowDiameter", laAnswerWindowDiameter);
    SetIntRegistryValue(key$, "ContrastFade", laContrastFade%);
    SetFloatRegistryValue(key$, "Loc1bXDeg", laLoc1bXDeg);
    SetFloatRegistryValue(key$, "Loc1bYDeg", laLoc1bYDeg);
    SetFloatRegistryValue(key$, "Loc2aXDeg", laLoc2aXDeg);
    SetFloatRegistryValue(key$, "Loc2aYDeg", laLoc2aYDeg);
    SetFloatRegistryValue(key$, "Loc2bXDeg", laLoc2bXDeg);
    SetFloatRegistryValue(key$, "Loc2bYDeg", laLoc2bYDeg);    
    
    SetFloatRegistryValue(key$, "FixAcquisitionTime", laFixAcquisitionTime);
    SetFloatRegistryValue(key$, "FixationDurationMin", laFixationDurationMin);
    SetFloatRegistryValue(key$, "FixationDurationVar", laFixationDurationVar);
    SetFloatRegistryValue(key$, "Page1DurationMin", laPage1DurationMin);
    SetFloatRegistryValue(key$, "Page1DurationVar", laPage1DurationVar);
    SetFloatRegistryValue(key$, "Page2DurationMin", laPage2DurationMin);
    SetFloatRegistryValue(key$, "Page2DurationVar", laPage2DurationVar);
    SetFloatRegistryValue(key$, "Page3DurationMin", laPage3DurationMin);
    SetFloatRegistryValue(key$, "Page3DurationVar", laPage3DurationVar);
    SetFloatRegistryValue(key$, "SaccadeReleaseDelayMin", laSaccadeReleaseDelayMin);
    SetFloatRegistryValue(key$, "SaccadeReleaseDelayVar", laSaccadeReleaseDelayVar);
    SetFloatRegistryValue(key$, "Sacc1AcqTime", laSacc1AcqTime);
    SetFloatRegistryValue(key$, "Sacc1HoldTime", laSacc1HoldTime);
    SetFloatRegistryValue(key$, "Sacc2AcqTime", laSacc2AcqTime);
    SetFloatRegistryValue(key$, "Sacc2HoldTime", laSacc2HoldTime);
    SetFloatRegistryValue(key$, "InterTrialTime", laInterTrialTime);
    SetFloatRegistryValue(key$, "AbortPenaltyTime", laAbortPenaltyTime);
    
    SetIntRegistryValue(key$, "OptoStartStage", laOptoStartStage%);
    SetIntRegistryValue(key$, "OptoEndStage", laOptoEndStage%);
    SetFloatRegistryValue(key$, "OptoVoltageOut", laOptoVoltageOut);
    
    SetIntRegistryValue(key$, "MSPerSmallRewardHit", laMSPerSmallRewardHit%);
    SetFloatRegistryValue(key$, "PSmallRewardHoldTarg", laPSmallRewardHoldTarg);
    SetFloatRegistryValue(key$, "PSmallRewardSaccade1", laPSmallRewardSaccade1);
    SetFloatRegistryValue(key$, "PJawsRewardInit", laPJawsRewardInit);
    
    'This is hardcoded
    'SetIntRegistryValue(key$, "HitsPerSmallReward", laHitsPerSmallReward%);    
    
end;




func LookAwayScriptDialog%()
    
    var gr$;  'to grab the grating parameters for parsing
    
    var thirteenInts%[13];
    var sixFloats[6];
    var seventeenFloats[17];
    var ow, oh, iw, ih, sf, tf, phse, ctf;
    var con%;
    var cv$, pat$, ap$;
    var i%;
    
    GetLookAwayExperimentType();
    'message("Experiment number is %d and experiment label is %s",laExperimentType%,laExperimentLabelShort$[laExperimentType%]);
    GetLookAwayParameters(laExperimentLabelShort$[laExperimentType%]);
    
    UpdateLookAwayScriptDialogLabels(laExperimentType%,laTrainingStageSSGNG%,laTrainingStageSSMicro%,laTrainingStageDS2S1%,laTrainingStageDS2S2%,0);
    
    'Calculate total trials for initial display
    nTrials% := CalcNumTrials%(laNRepeats%,laNRepeatsUseJAWS%,laNRepeatsNoJAWS%,laNRepeatsLoc1ToJF%,
                laNRepeatsLoc1AwayJF%,laNRepeatsLoc1Only%,laNRepeatsLoc1Loc2%,laExperimentType%,laTrainingStageSSGNG%,
                laTrainingStageSSMicro%,laTrainingStageDS2S1%,laTrainingStageDS2S2%);
    laTotalTrialsText$ := "Total number of trials: " + Str$(nTrials%);
    
    'Get values for gabor properties from the main stimulus
    gr$ := GetGratingParameters$("Stimulus");
    ParseGratingParameters%(gr$, laLoc1aXDeg, laLoc1aYDeg, ow, oh, iw, ih, con%, sf, tf, laGratingOri, phse, cv$, pat$, ap$, ctf);
    
    laJAWSFieldLocText$ := "JAWS Field: X = " + Str$(laLoc1aXDeg) + ", Y = " + Str$(laLoc1aYDeg);
    
    'Pack thirteenInts%[], sixFloats[], seventeenFloats[]
    thirteenInts%[0] := laExperimentType%;
    thirteenInts%[1] := laTrainingStageSSGNG%;
    thirteenInts%[2] := laTrainingStageSSMicro%;
    thirteenInts%[3] := laAlwaysLooking%;
    thirteenInts%[4] := laTrainingStageDS2S1%;
    thirteenInts%[5] := laTrainingStageDS2S2%;
    thirteenInts%[6] := laNRepeats%;
    thirteenInts%[7] := laNRepeatsLoc1ToJF%;
    thirteenInts%[8] := laNRepeatsUseJAWS%;
    thirteenInts%[9] := laNRepeatsLoc1Only%;
    thirteenInts%[10] := laNRepeatsLoc1AwayJF%;
    thirteenInts%[11] := laNRepeatsNoJAWS%;
    thirteenInts%[12] := laNRepeatsLoc1Loc2%;
    
    
    sixFloats[0] := laLoc1bXDeg;
    sixFloats[1] := laLoc2aXDeg;
    sixFloats[2] := laLoc2bXDeg;
    sixFloats[3] := laLoc1bYDeg;
    sixFloats[4] := laLoc2aYDeg;
    sixFloats[5] := laLoc2bYDeg;
    
    
    seventeenFloats[0] := laInterTrialTime;
    seventeenFloats[1] := laAbortPenaltyTime;
    seventeenFloats[2] := laFixAcquisitionTime;
    seventeenFloats[3] := laFixationDurationMin;
    seventeenFloats[4] := laPage1DurationMin;
    seventeenFloats[5] := laPage2DurationMin;
    seventeenFloats[6] := laFixationDurationVar;
    seventeenFloats[7] := laPage1DurationVar;
    seventeenFloats[8] := laPage2DurationVar;
    seventeenFloats[9] := laPage3DurationMin;
    seventeenFloats[10] := laSaccadeReleaseDelayMin;
    seventeenFloats[11] := laPage3DurationVar;
    seventeenFloats[12] := laSaccadeReleaseDelayVar;
    seventeenFloats[13] := laSacc1AcqTime;
    seventeenFloats[14] := laSacc1HoldTime;
    seventeenFloats[15] := laSacc2AcqTime;
    seventeenFloats[16] := laSacc2HoldTime;
           
    
    'These are laid out so I can design the dialog; use ConteTaskSaccade for design framework (easier to be flexible
    'when moving crap around, this dialog will probably change a ton before reaching its final form)
    
    'Experiment options
    'laExperimentType%          laTrainingStageSSGNG%       laTrainingStageSSMicro%                            
    'laAlwaysLooking%           laTrainingStageDS2S1%       laTrainingStageDS2S2%       
    
    'Trial spec options
    '[display of total trials]  laNRepeats%                    
    'laNRepeatsLoc1ToJF%        laNRepeatsUseJAWS%          laNRepeatsLoc1Only%
    'laNRepeatsLoc1AwayJF%      laNRepeatsNoJAWS%           laNRepeatsLoc1Loc2%                                     
    
    'Target Spec options
    '[display of location 1]    laAnswerWindowDiameter      laContrastFade%
    'laLoc1bXDeg                laLoc2aXDeg                 laLoc2bXDeg                 
    'laLoc1bYDeg                laLoc2aYDeg                 laLoc2bYDeg
    
    'timing options
    'laFixAcquisitionTime       laFixationDurationMin       laFixationDurationVar
    'laPage1DurationMin         laPage2DurationMin          laSaccadeReleaseDelayMin    
    'laPage1DurationVar         laPage2DurationVar          laSaccadeReleaseDelayVar
    'laSacc1AcqTime             laSacc2AcqTime              laInterTrialTime 
    'laSacc1HoldTime            laSacc2HoldTime             laAbortPenaltyTime
    
    
    'want to rethink timing options, need to rename (??), reorg, add two more.
    'timing options
    'laInterTrialTime           laAbortPenaltyTime          laFixationAcquisitionTime
    'laFixationDurationMin      laPage1DurationMin          laPage2DurationMin
    'laFixationDurationVar      laPage1DurationVar          laPage2DurationVar
    'laPage3DurationMin         laSaccadeReleaseDelayMin    
    'laPage3DurationVar         laSaccadeReleaseDelayVar
    'laSacc1AcqTime             laSacc1HoldTime
    'laSacc2AcqTime             laSacc2HoldTime
    
    'opto/JAWS options
    'laOptoStartStage%          laOptoEndStage%             laOptoVoltageOut
    
    'reward options
    'laPJawsRewardInit                                      
    'laMSPerSmallRewardHit%     laPSmallRewardHoldTarg      laPSmallRewardSaccade1
    
    'laHitsPerSmallReward%  '''for now this one is not going to be in the dialog
    
    'Create variables for dialog layout
    'Column and dialog widths 
    var wDlg% := 153;  'Let's go crazy wide, 150+3
    var c1% := 2;      'first column starts
    var c22% := 77;    'second column starts, 2-col, 75+2
    var c23% := 52;    'second column starts, 3-col, 50+2
    var c33% := 102;    'third column starts, 3-col, 100+2    
    'Group heights
    var hExOpt% := 3;    'height of experiment options group
    var hTrSpec% := 4;   'height of trial specification group
    var hTarg% := 4;     'height of target spec options group
    var hTime% := 8;     'height of timing options group
    var hOpto% := 2;     'height of opto options group
    var hRew% := 3;      'height of reward options group
    'Group start lines
    var sExOpt% := 1;                   'Start line of experiment options group
    var sTrSpec% := sExOpt% + hExOpt%;  'start line of trial specification group
    var sTarg% := sTrSpec% + hTrSpec%;  'start line of target spec options group
    var sTime% := sTarg% + hTarg%;      'start line of timing options group, use sTime% to avoid potential future conflict with "stim%"
    var sOpto% := sTime% + hTime%;      'start line of opto options group
    var sRew% := sOpto% + hOpto%;       'start line of reward options group
    'Height of entire dialog
    var hDlg% := sRew% + hRew% + 1; 'height of entire dialog
    'Width of a numeric dialog entry box
    var wNum% := 6; 
    'Width of a text box
    var wTxt% := 50 - wNum% - 3;
    
    
    DlgCreate("Look Away Task Parameters",0,0,wDlg%,hDlg%);
    
    DlgGroup("Experimental Options",1,sExOpt%,wDlg%-2,hExOpt%);
    DlgList(laDlgExperimentType%,30,laExperimentLabel$[],4,c1%+1,sExOpt%+1);  'Note that list boxes need to be shifted rightwards a bit, trying 1
    DlgList(laDlgTrainingStageSSGNG%,30,trainingStageOptsSSGNG$[],nTrainingStageOptsSSGNG%,c23%+1,sExOpt%+1);
    DlgList(laDlgTrainingStageSSMicro%,30,trainingStageOptsSSMicro$[],nTrainingStageOptsSSMicro%,c33%+1,sExOpt%+1);
    DlgCheck(laDlgAlwaysLooking%,"Always Looking",c1%+1,sExOpt%+2); 
    DlgList(laDlgTrainingStageDS2S1%,30,trainingStageOptsDS2S1$[],nTrainingStageOptsDS2S1%,c23%+1,sExOpt%+2);
    DlgList(laDlgTrainingStageDS2S2%,30,trainingStageOptsDS2S2$[],nTrainingStageOptsDS2S2%,c33%+1,sExOpt%+2);
    
    
    DlgGroup("Trial Specification",1,sTrSpec%,wDlg%-2,hTrSpec%);
    hTotalTrials% := DlgText(laTotalTrialsText$,c1%+1,sTrSpec%+1,wTxt%);
    DlgInteger(laDlgNRepeats%,wNum%,1,laMaxTrialPerDataPoint%,c23%+1,sTrSpec%+1);  DlgText("Number of Repeats",c23%+wNum%+2,sTrSpec%+1,wTxt%);  'no variable to hold output of DlgText if we won't ever turn the field off
    DlgInteger(laDlgNRepeatsLoc1ToJF%,wNum%,0,laMaxTrialPerDataPoint%,c1%+1,sTrSpec%+2);  hNRepeatsLoc1ToJF% := DlgText(labelNRepeatsLoc1ToJF$,c1%+wNum%+2,sTrSpec%+2,wTxt%);
    DlgInteger(laDlgNRepeatsUseJAWS%,wNum%,0,laMaxTrialPerDataPoint%,c23%+1,sTrSpec%+2);  hNRepeatsUseJAWS% := DlgText("N Repeats use JAWS",c23%+wNum%+2,sTrSpec%+2,wTxt%);
    DlgInteger(laDlgNRepeatsLoc1Only%,wNum%,0,laMaxTrialPerDataPoint%,c33%+1,sTrSpec%+2);  hNRepeatsLoc1Only% := DlgText(labelNRepeatsLoc1Only$,c33%+wNum%+2,sTrSpec%+2,wTxt%);
    DlgInteger(laDlgNRepeatsLoc1AwayJF%,wNum%,0,laMaxTrialPerDataPoint%,c1%+1,sTrSpec%+3);  hNRepeatsLoc1AwayJF% := DlgText(labelNRepeatsLoc1AwayJF$,c1%+wNum%+2,sTrSpec%+3,wTxt%);
    DlgInteger(laDlgNRepeatsNoJAWS%,wNum%,0,laMaxTrialPerDataPoint%,c23%+1,sTrSpec%+3);  hNRepeatsNoJAWS% := DlgText("N Repeats do not use JAWS",c23%+wNum%+2,sTrSpec%+3,wTxt%);
    DlgInteger(laDlgNRepeatsLoc1Loc2%,wNum%,0,laMaxTrialPerDataPoint%,c33%+1,sTrSpec%+3);  hNRepeatsLoc1Loc2% := DlgText(labelNRepeatsLoc1Loc2$,c33%+wNum%+2,sTrSpec%+3,wTxt%);
    
    
    DlgGroup("Target Specification",1,sTarg%,wDlg%-2,hTarg%);
    hJAWSFieldLoc% := DlgText(laJAWSFieldLocText$,c1%+1,sTarg%+1,wTxt%);
    DlgReal(laDlgAnswerWindowDiameter%,wNum%,0,40,c23%+1,sTarg%+1);  hLoc2aYDeg% := DlgText("Answer Window Diam (deg)",c23%+wNum%+2,sTarg%+1,wTxt%);
    DlgInteger(laDlgContrastFade%,wNum%,0,100,c33%+1,sTarg%+1);  hContrastFade% := DlgText(labelContrastFade$,c33%+wNum%+2,sTarg%+1,wTxt%);
    DlgReal(laDlgLoc1bXDeg%,wNum%,-30,30,c1%+1,sTarg%+2);  hLoc1bXDeg% := DlgText(labelLoc1bXDeg$,c1%+wNum%+2,sTarg%+2,wTxt%);
    DlgReal(laDlgLoc2aXDeg%,wNum%,-30,30,c23%+1,sTarg%+2);  hLoc2aXDeg% := DlgText(labelLoc2aXDeg$,c23%+wNum%+2,sTarg%+2,wTxt%);
    DlgReal(laDlgLoc2bXDeg%,wNum%,-30,100,c33%+1,sTarg%+2);  hLoc2bXDeg% := DlgText(labelLoc2bXDeg$,c33%+wNum%+2,sTarg%+2,wTxt%);  'We are hijacking loc2bXDeg for the fixpt fade in one specific single-saccade training step, have to allow up to 100
    DlgReal(laDlgLoc1bYDeg%,wNum%,-30,30,c1%+1,sTarg%+3);  hLoc1bYDeg% := DlgText(labelLoc1bYDeg$,c1%+wNum%+2,sTarg%+3,wTxt%);
    DlgReal(laDlgLoc2aYDeg%,wNum%,-30,30,c23%+1,sTarg%+3);  hLoc2aYDeg% := DlgText(labelLoc2aYDeg$,c23%+wNum%+2,sTarg%+3,wTxt%);
    DlgReal(laDlgLoc2bYDeg%,wNum%,-30,30,c33%+1,sTarg%+3);  hLoc2bYDeg% := DlgText(labelLoc2bYDeg$,c33%+wNum%+2,sTarg%+3,wTxt%);
    
    
    
    DlgGroup("Timing Options",1,sTime%,wDlg%-2,hTime%);
    DlgReal(laDlgInterTrialTime%,wNum%,0,40,c1%+1,sTime%+1);  DlgText("Intertrial Time (s)",c1%+wNum%+2,sTime%+1,wTxt%);
    DlgReal(laDlgAbortPenaltyTime%,wNum%,0,40,c23%+1,sTime%+1);  DlgText("Abort Penalty Time (s)",c23%+wNum%+2,sTime%+1,wTxt%);
    DlgReal(laDlgFixAcquisitionTime%,wNum%,0,40,c33%+1,sTime%+1);  DlgText("Fixation Acquisition Time (s)",c33%+wNum%+2,sTime%+1,wTxt%);
    DlgReal(laDlgFixationDurationMin%,wNum%,0,40,c1%+1,sTime%+2);  hFixationDurationMin% := DlgText(labelFixationDurationMin$,c1%+wNum%+2,sTime%+2,wTxt%);
    DlgReal(laDlgPage1DurationMin%,wNum%,0,40,c23%+1,sTime%+2);  hPage1DurationMin% := DlgText(labelPage1DurationMin$,c23%+wNum%+2,sTime%+2,wTxt%);
    DlgReal(laDlgPage2DurationMin%,wNum%,0,40,c33%+1,sTime%+2);  hPage2DurationMin% := DlgText(labelPage2DurationMin$,c33%+wNum%+2,sTime%+2,wTxt%);
    DlgReal(laDlgFixationDurationVar%,wNum%,0,40,c1%+1,sTime%+3);  hFixationDurationVar% := DlgText(labelFixationDurationVar$,c1%+wNum%+2,sTime%+3,wTxt%);
    DlgReal(laDlgPage1DurationVar%,wNum%,0,40,c23%+1,sTime%+3);  hPage1DurationVar% := DlgText(labelPage1DurationVar$,c23%+wNum%+2,sTime%+3,wTxt%);
    DlgReal(laDlgPage2DurationVar%,wNum%,0,40,c33%+1,sTime%+3);  hPage2DurationVar% := DlgText(labelPage2DurationVar$,c33%+wNum%+2,sTime%+3,wTxt%);
    DlgReal(laDlgPage3DurationMin%,wNum%,0,40,c1%+1,sTime%+4);  hPage3DurationMin% := DlgText(labelPage3DurationMin$,c1%+wNum%+2,sTime%+4,wTxt%);
    DlgReal(laDlgSaccadeReleaseDelayMin%,wNum%,0,40,c23%+1,sTime%+4);  hSaccadeReleaseDelayMin% := DlgText(labelSaccadeReleaseDelayMin$,c23%+wNum%+2,sTime%+4,wTxt%);
    DlgReal(laDlgPage3DurationVar%,wNum%,0,40,c1%+1,sTime%+5);  hPage3DurationVar% := DlgText(labelPage3DurationVar$,c1%+wNum%+2,sTime%+5,wTxt%);
    DlgReal(laDlgSaccadeReleaseDelayVar%,wNum%,0,40,c23%+1,sTime%+5);  hSaccadeReleaseDelayVar% := DlgText(labelSaccadeReleaseDelayVar$,c23%+wNum%+2,sTime%+5,wTxt%);
    DlgReal(laDlgSacc1AcqTime%,wNum%,0,40,c1%+1,sTime%+6);  hSacc1AcqTime% := DlgText("Saccade 1 Acquisition Time (s)",c1%+wNum%+2,sTime%+6,wTxt%);
    DlgReal(laDlgSacc1HoldTime%,wNum%,0,40,c23%+1,sTime%+6);  DlgText("Saccade 1 Hold Time (s)",c23%+wNum%+2,sTime%+6,wTxt%);
    DlgReal(laDlgSacc2AcqTime%,wNum%,0,40,c1%+1,sTime%+7);  hSacc2AcqTime% := DlgText("Saccade 2 Acquisition Time (s)",c1%+wNum%+2,sTime%+7,wTxt%);
    DlgReal(laDlgSacc2HoldTime%,wNum%,0,40,c23%+1,sTime%+7);  hSacc2HoldTime% := DlgText("Saccade 2 Hold Time (s)",c23%+wNum%+2,sTime%+7,wTxt%);
    
    
    DlgGroup("Opto/JAWS Options",1,sOpto%,wDlg%-2,hOpto%);
    DlgList(laDlgOptoStartStage% ,30,optoStages$[],nOptoStages%,c1%+1,sOpto%+1);  'Note that list boxes need to be shifted rightwards a bit, trying 1
    DlgList(laDlgOptoEndStage% ,30,optoStages$[],nOptoStages%,c23%+1,sOpto%+1);
    DlgReal(laDlgOptoVoltageOut%,wNum%,0.0002,5,c33%+1,sOpto%+1);  hOptoVoltageOut% := DlgText("Opto Voltage (v)",c33%+wNum%+2,sOpto%+1,wTxt%);  '.0002 is the minimum value that will give any change at all (to 1 in a 15-bit range) on the DAC
    
    
    DlgGroup("Reward Options",1,sRew%,wDlg%-2,hRew%);
    DlgReal(laDlgPJawsRewardInit%,wNum%,0,100,c1%+1,sRew%+1);  hPJawsRewardInit% := DlgText("Initial JAWS Reward (Pct)",c1%+wNum%+2,sRew%+1,wTxt%);
    DlgInteger(laDlgMSPerSmallRewardHit%,wNum%,0,2000,c1%+1,sRew%+2);  DlgText("Small Reward Size (ms)",c1%+wNum%+2,sRew%+2,wTxt%);
    DlgReal(laDlgPSmallRewardHoldTarg%,wNum%,0,100,c23%+1,sRew%+2);  DlgText("Small Reward Prob for Hold (Pct)",c23%+wNum%+2,sRew%+2,wTxt%);
    DlgReal(laDlgPSmallRewardSaccade1%,wNum%,0,100,c33%+1,sRew%+2);  hPSmallRewardSaccade1% := DlgText("Small Reward Prob for Sacc 1 (Pct)",c33%+wNum%+2,sRew%+2,wTxt%);
    
    
    DlgAllow(0xffff, 0, LookAwayScriptDialogChanged%);
    i%:=DlgShow(thirteenInts%[],laAnswerWindowDiameter,laContrastFade%,sixFloats[],seventeenFloats[],laOptoStartStage%,laOptoEndStage%,
    laOptoVoltageOut,laPJawsRewardInit,laMSPerSmallRewardHit%,laPSmallRewardHoldTarg,
    laPSmallRewardSaccade1);
    
    
    if i% = 1 then
        'Unpack thirteenInts%[], sixFloats[], seventeenFloats[]
        laExperimentType% := thirteenInts%[0];
        laTrainingStageSSGNG% := thirteenInts%[1];
        laTrainingStageSSMicro% := thirteenInts%[2];
        laAlwaysLooking% := thirteenInts%[3];
        laTrainingStageDS2S1% := thirteenInts%[4];
        laTrainingStageDS2S2% := thirteenInts%[5];
        laNRepeats% := thirteenInts%[6];
        laNRepeatsLoc1ToJF% := thirteenInts%[7];
        laNRepeatsUseJAWS% := thirteenInts%[8];
        laNRepeatsLoc1Only% := thirteenInts%[9];
        laNRepeatsLoc1AwayJF% := thirteenInts%[10];
        laNRepeatsNoJAWS% := thirteenInts%[11];
        laNRepeatsLoc1Loc2% := thirteenInts%[12];
        
        laLoc1bXDeg := sixFloats[0];
        laLoc2aXDeg := sixFloats[1];
        laLoc2bXDeg := sixFloats[2];
        laLoc1bYDeg := sixFloats[3];
        laLoc2aYDeg := sixFloats[4];
        laLoc2bYDeg := sixFloats[5];

        laInterTrialTime := seventeenFloats[0];
        laAbortPenaltyTime := seventeenFloats[1];
        laFixAcquisitionTime := seventeenFloats[2];
        laFixationDurationMin := seventeenFloats[3];
        laPage1DurationMin := seventeenFloats[4];
        laPage2DurationMin := seventeenFloats[5];
        laFixationDurationVar := seventeenFloats[6];
        laPage1DurationVar := seventeenFloats[7];
        laPage2DurationVar := seventeenFloats[8];
        laPage3DurationMin := seventeenFloats[9];
        laSaccadeReleaseDelayMin := seventeenFloats[10];
        laPage3DurationVar := seventeenFloats[11];
        laSaccadeReleaseDelayVar := seventeenFloats[12];
        laSacc1AcqTime := seventeenFloats[13];
        laSacc1HoldTime := seventeenFloats[14];
        laSacc2AcqTime := seventeenFloats[15];
        laSacc2HoldTime := seventeenFloats[16];
        
        
        SaveLookAwayExperimentType();
        SaveLookAwayParameters(laExperimentLabelShort$[laExperimentType%]);
        
        'Let's get a fresh value for nTrials.  We do this before the Start%() function so we can bail out immediately if we go over
        nTrials% := CalcNumTrials%(laNRepeats%,laNRepeatsUseJAWS%,laNRepeatsNoJAWS%,laNRepeatsLoc1ToJF%,
                laNRepeatsLoc1AwayJF%,laNRepeatsLoc1Only%,laNRepeatsLoc1Loc2%,laExperimentType%,laTrainingStageSSGNG%,
                laTrainingStageSSMicro%,laTrainingStageDS2S1%,laTrainingStageDS2S2%);
        if nTrials% > MAXTRIALS% then
            message("The total number of trials requested was " + Str$(nTrials%) + " but the maximum trials allowed is " + Str$(MAXTRIALS%) + ", quitting!");
            halt;
        endif
        
        
    endif;
    
	return i%;
end



func LookAwayScriptDialogChanged%(item%)
    var i%; 
    var nTrialsLocal%;
    var status% := 1;
    
    'When the experiment is changed, enable/disable the correct training drop downs
    if item% = laDlgExperimentType% or item% = 0 then  'this would be the experiment selection list, or the first time through
        docase
        case DlgValue(laDlgExperimentType%) = 0 then
            DlgEnable(1,laDlgTrainingStageSSGNG%);
            DlgEnable(0,laDlgTrainingStageSSMicro%);
            DlgEnable(0,laDlgTrainingStageDS2S1%);
            DlgEnable(0,laDlgTrainingStageDS2S2%);
        case DlgValue(laDlgExperimentType%) = 1 then
            DlgEnable(0,laDlgTrainingStageSSGNG%);
            DlgEnable(1,laDlgTrainingStageSSMicro%);
            DlgEnable(0,laDlgTrainingStageDS2S1%);
            DlgEnable(0,laDlgTrainingStageDS2S2%);
        case DlgValue(laDlgExperimentType%) = 2 then
            DlgEnable(0,laDlgTrainingStageSSGNG%);
            DlgEnable(0,laDlgTrainingStageSSMicro%);
            DlgEnable(1,laDlgTrainingStageDS2S1%);
            DlgEnable(0,laDlgTrainingStageDS2S2%);
        case DlgValue(laDlgExperimentType%) = 3 then
            DlgEnable(0,laDlgTrainingStageSSGNG%);
            DlgEnable(0,laDlgTrainingStageSSMicro%);
            DlgEnable(0,laDlgTrainingStageDS2S1%);
            DlgEnable(1,laDlgTrainingStageDS2S2%);
        endcase
        
        'Also, if the experiment is changed we need to grab this experiment's values from the registry, and repopulate
        if item% = laDlgExperimentType% then
            GetLookAwayParameters(laExperimentLabelShort$[DlgValue(laDlgExperimentType%)]);
            DlgValue(laDlgAlwaysLooking%, laAlwaysLooking%);
            DlgValue(laDlgNRepeats%, laNRepeats%);
            DlgValue(laDlgNRepeatsLoc1ToJF%, laNRepeatsLoc1ToJF%);
            DlgValue(laDlgNRepeatsLoc1AwayJF%, laNRepeatsLoc1AwayJF%);
            DlgValue(laDlgNRepeatsUseJAWS%, laNRepeatsUseJAWS%);
            DlgValue(laDlgNRepeatsNoJAWS%, laNRepeatsNoJAWS%);    
            DlgValue(laDlgNRepeatsLoc1Only%, laNRepeatsLoc1Only%);
            DlgValue(laDlgNRepeatsLoc1Loc2%, laNRepeatsLoc1Loc2%);
            DlgValue(laDlgAnswerWindowDiameter%, laAnswerWindowDiameter);
            DlgValue(laDlgContrastFade%, laContrastFade%);
            DlgValue(laDlgLoc1bXDeg%, laLoc1bXDeg);
            DlgValue(laDlgLoc1bYDeg%, laLoc1bYDeg);
            DlgValue(laDlgLoc2aXDeg%, laLoc2aXDeg);
            DlgValue(laDlgLoc2aYDeg%, laLoc2aYDeg);
            DlgValue(laDlgLoc2bXDeg%, laLoc2bXDeg);
            DlgValue(laDlgLoc2bYDeg%, laLoc2bYDeg);    
            DlgValue(laDlgFixAcquisitionTime%, laFixAcquisitionTime);
            DlgValue(laDlgFixationDurationMin%, laFixationDurationMin);
            DlgValue(laDlgFixationDurationVar%, laFixationDurationVar);
            DlgValue(laDlgPage1DurationMin%, laPage1DurationMin);
            DlgValue(laDlgPage1DurationVar%, laPage1DurationVar);
            DlgValue(laDlgPage2DurationMin%, laPage2DurationMin);
            DlgValue(laDlgPage2DurationVar%, laPage2DurationVar);
            DlgValue(laDlgPage3DurationMin%, laPage3DurationMin);
            DlgValue(laDlgPage3DurationVar%, laPage3DurationVar);
            DlgValue(laDlgSaccadeReleaseDelayMin%, laSaccadeReleaseDelayMin);
            DlgValue(laDlgSaccadeReleaseDelayVar%, laSaccadeReleaseDelayVar);
            DlgValue(laDlgSacc1AcqTime%, laSacc1AcqTime);
            DlgValue(laDlgSacc1HoldTime%, laSacc1HoldTime);
            DlgValue(laDlgSacc2AcqTime%, laSacc2AcqTime);
            DlgValue(laDlgSacc2HoldTime%, laSacc2HoldTime);
            DlgValue(laDlgInterTrialTime%, laInterTrialTime);
            DlgValue(laDlgAbortPenaltyTime%, laAbortPenaltyTime);
            DlgValue(laDlgOptoStartStage%, laOptoStartStage%);
            DlgValue(laDlgOptoEndStage%, laOptoEndStage%);
            DlgValue(laDlgOptoVoltageOut%, laOptoVoltageOut);
            DlgValue(laDlgMSPerSmallRewardHit%, laMSPerSmallRewardHit%);
            DlgValue(laDlgPSmallRewardHoldTarg%, laPSmallRewardHoldTarg);
            DlgValue(laDlgPSmallRewardSaccade1%, laPSmallRewardSaccade1);
            DlgValue(laDlgPJawsRewardInit%, laPJawsRewardInit);            
        endif
        
        
    endif  
    
    'When the training step is changed, update which dialog entries are enabled/disabled
    'Note that we ALSO have to do this if the experiment is changed
    if item% = 0 or item% = laDlgExperimentType% or item% = laDlgTrainingStageSSGNG% or item% = laDlgTrainingStageSSMicro% or item% = laDlgTrainingStageDS2S1% or item% = laDlgTrainingStageDS2S2% then  'Any step where we use an experiment or training step listbox
        
        'Update the dialog label variables
        UpdateLookAwayScriptDialogLabels(DlgValue(laDlgExperimentType%),DlgValue(laDlgTrainingStageSSGNG%),DlgValue(laDlgTrainingStageSSMicro%),DlgValue(laDlgTrainingStageDS2S1%),DlgValue(laDlgTrainingStageDS2S2%),1);
        
        'Gonna be a HUGE list here in a case statement, going to have to depend on
        'laExperimentType% AND laTrainingStageXXXXX%
        'Splitting the values here into triplets for easier reading
        'Triplet 1 = NRepeatsJaws%/NRepeatsNoJaws%      NRepeatsLoc1Only%/NRepeatsLoc1Loc2%      ContrastFade%
        'Triplet 2 = Loc1bXDeg%/Loc1bYDeg%              Loc2aXDeg%/Loc2aYDeg%                    Loc2bXDeg%/Loc2bYDeg%
        'Triplet 3 = Page2DurationMin%/...Var%          Page3DurationMin%/...Var%                SaccadeReleaseDelayMin%/...Var%
        'Triplet 4 = Sacc2AcqTime%/Sacc2HoldTime%       [All 4 Opto options]                     PSmallRewardSaccade1%
        'Solo 5 = Sacc2AcqTime%
        docase
        'Single-Saccade GNG Experiment    
        case DlgValue(laDlgExperimentType%) = 0 and DlgValue(laDlgTrainingStageSSGNG%) = 0 then
            UpdateLookAwayScriptDialogEnable(0,0,1, 1,0,2, 1,0,0, 0,0,0 ,0);
        case DlgValue(laDlgExperimentType%) = 0 and DlgValue(laDlgTrainingStageSSGNG%) = 1 then
            UpdateLookAwayScriptDialogEnable(0,0,0, 1,0,0, 1,0,0, 0,0,0 ,0);
        case DlgValue(laDlgExperimentType%) = 0 and DlgValue(laDlgTrainingStageSSGNG%) = 2 then
            UpdateLookAwayScriptDialogEnable(0,0,0, 1,0,0, 1,1,0, 0,0,0 ,0);
        case DlgValue(laDlgExperimentType%) = 0 and DlgValue(laDlgTrainingStageSSGNG%) = 3 then
            UpdateLookAwayScriptDialogEnable(1,0,1, 1,0,0, 1,1,0, 0,1,0 ,0);
        case DlgValue(laDlgExperimentType%) = 0 and DlgValue(laDlgTrainingStageSSGNG%) = 4 then
            UpdateLookAwayScriptDialogEnable(1,0,0, 1,0,0, 1,1,0, 0,1,0 ,0);
        'Microstim Single-Saccade Experiment    
        case DlgValue(laDlgExperimentType%) = 1 and DlgValue(laDlgTrainingStageSSMicro%) = 0 then  
            UpdateLookAwayScriptDialogEnable(0,0,0, 1,1,0, 0,0,0, 0,0,0 ,1);
        case DlgValue(laDlgExperimentType%) = 1 and DlgValue(laDlgTrainingStageSSMicro%) = 1 then  
            UpdateLookAwayScriptDialogEnable(0,1,0, 1,1,0, 1,0,0, 0,0,0 ,1);
        case DlgValue(laDlgExperimentType%) = 1 and DlgValue(laDlgTrainingStageSSMicro%) = 2 then
            UpdateLookAwayScriptDialogEnable(1,1,1, 1,1,0, 1,0,0, 0,1,0 ,1);
        case DlgValue(laDlgExperimentType%) = 1 and DlgValue(laDlgTrainingStageSSMicro%) = 3 then  
            UpdateLookAwayScriptDialogEnable(1,1,0, 1,1,0, 0,0,1, 0,1,0 ,1);
        'Double Saccade 2 S1 Experiment    
        case DlgValue(laDlgExperimentType%) = 2 and DlgValue(laDlgTrainingStageDS2S1%) = 0 then  
            UpdateLookAwayScriptDialogEnable(0,0,0, 1,0,0, 0,0,0, 0,0,0 ,1);
        case DlgValue(laDlgExperimentType%) = 2 and DlgValue(laDlgTrainingStageDS2S1%) = 1 then  
            UpdateLookAwayScriptDialogEnable(0,1,0, 1,1,0, 1,0,0, 1,0,1 ,1);
        case DlgValue(laDlgExperimentType%) = 2 and DlgValue(laDlgTrainingStageDS2S1%) = 2 then  
            UpdateLookAwayScriptDialogEnable(0,0,1, 1,1,0, 1,0,0, 1,0,1 ,1);
        case DlgValue(laDlgExperimentType%) = 2 and DlgValue(laDlgTrainingStageDS2S1%) = 3 then  
            UpdateLookAwayScriptDialogEnable(0,0,0, 1,1,0, 0,0,0, 1,0,1 ,1);
        case DlgValue(laDlgExperimentType%) = 2 and DlgValue(laDlgTrainingStageDS2S1%) = 4 then  
            UpdateLookAwayScriptDialogEnable(0,0,0, 1,1,0, 1,0,0, 1,0,1 ,1);
        case DlgValue(laDlgExperimentType%) = 2 and DlgValue(laDlgTrainingStageDS2S1%) = 5 then  
            UpdateLookAwayScriptDialogEnable(1,0,1, 1,1,0, 1,1,0, 1,1,1 ,1);
        case DlgValue(laDlgExperimentType%) = 2 and DlgValue(laDlgTrainingStageDS2S1%) = 6 then  
            UpdateLookAwayScriptDialogEnable(1,0,0, 1,1,0, 1,0,1, 1,1,1 ,1);
        'Double Saccade 2 S2 Experiment    
        case DlgValue(laDlgExperimentType%) = 3 and DlgValue(laDlgTrainingStageDS2S2%) = 0 then  
            UpdateLookAwayScriptDialogEnable(0,0,0, 1,0,0, 0,0,0, 0,0,0 ,1);
        case DlgValue(laDlgExperimentType%) = 3 and DlgValue(laDlgTrainingStageDS2S2%) = 1 then  
            UpdateLookAwayScriptDialogEnable(0,1,0, 1,1,0, 1,0,0, 1,0,1 ,1);
        case DlgValue(laDlgExperimentType%) = 3 and DlgValue(laDlgTrainingStageDS2S2%) = 2 then  
            UpdateLookAwayScriptDialogEnable(0,0,1, 1,1,1, 1,0,0, 1,0,1 ,1);
        case DlgValue(laDlgExperimentType%) = 3 and DlgValue(laDlgTrainingStageDS2S2%) = 3 then  
            UpdateLookAwayScriptDialogEnable(0,0,0, 1,1,1, 0,0,0, 1,0,1 ,1);
        case DlgValue(laDlgExperimentType%) = 3 and DlgValue(laDlgTrainingStageDS2S2%) = 4 then  
            UpdateLookAwayScriptDialogEnable(0,0,0, 1,1,1, 1,0,0, 1,0,1 ,1);
        case DlgValue(laDlgExperimentType%) = 3 and DlgValue(laDlgTrainingStageDS2S2%) = 5 then  
            UpdateLookAwayScriptDialogEnable(1,0,1, 1,1,1, 1,1,0, 1,1,1 ,1);
        case DlgValue(laDlgExperimentType%) = 3 and DlgValue(laDlgTrainingStageDS2S2%) = 6 then  
            UpdateLookAwayScriptDialogEnable(1,0,0, 1,1,1, 1,0,1, 1,1,1 ,1);      
        endcase
        
        'Also update the value of nTrials
        nTrialsLocal% := CalcNumTrials%(DlgValue(laDlgNRepeats%),DlgValue(laDlgNRepeatsUseJAWS%),
                         DlgValue(laDlgNRepeatsNoJAWS%),DlgValue(laDlgNRepeatsLoc1ToJF%),
                         DlgValue(laDlgNRepeatsLoc1AwayJF%),DlgValue(laDlgNRepeatsLoc1Only%),
                         DlgValue(laDlgNRepeatsLoc1Loc2%),DlgValue(laDlgExperimentType%),
                         DlgValue(laDlgTrainingStageSSGNG%),DlgValue(laDlgTrainingStageSSMicro%),
                         DlgValue(laDlgTrainingStageDS2S1%),DlgValue(laDlgTrainingStageDS2S2%));
        laTotalTrialsText$ := "Total number of trials: " + Str$(nTrialsLocal%);  'This variable is global, so...update it I guess
        DlgValue$(hTotalTrials%,laTotalTrialsText$)
        
 
    endif
    
    'If the number of requested trials in any condition has changed, update nTrials in the dialog
    if item% = laDlgNRepeats% or item% = laDlgNRepeatsUseJAWS% or item% = laDlgNRepeatsNoJAWS% or item% = laDlgNRepeatsLoc1ToJF% or item% = laDlgNRepeatsLoc1AwayJF% or item% = laDlgNRepeatsLoc1Only% or item% = laDlgNRepeatsLoc1Loc2% then
        nTrialsLocal% := CalcNumTrials%(DlgValue(laDlgNRepeats%),DlgValue(laDlgNRepeatsUseJAWS%),
                         DlgValue(laDlgNRepeatsNoJAWS%),DlgValue(laDlgNRepeatsLoc1ToJF%),
                         DlgValue(laDlgNRepeatsLoc1AwayJF%),DlgValue(laDlgNRepeatsLoc1Only%),
                         DlgValue(laDlgNRepeatsLoc1Loc2%),DlgValue(laDlgExperimentType%),
                         DlgValue(laDlgTrainingStageSSGNG%),DlgValue(laDlgTrainingStageSSMicro%),
                         DlgValue(laDlgTrainingStageDS2S1%),DlgValue(laDlgTrainingStageDS2S2%));
        laTotalTrialsText$ := "Total number of trials: " + Str$(nTrialsLocal%);  'This variable is global, so...update it I guess
        DlgValue$(hTotalTrials%,laTotalTrialsText$)
    endif
    
    
    'optoStages$[0] := "Fix: Pre-Stim";  'Holding fixation before Page 1
    'optoStages$[1] := "Fix: Guide Stim";  'During page 1
    'optoStages$[2] := "Fix: S1-S2 Gap (GNG only)";  'During Page 2, training step 3-4, GNG only
    'optoStages$[3] := "Fix: Initiating Stim";  'During Page 2 in double-saccade, Page 3 in GNG, not allowed for microstim
    'optoStages$[4] := "Fix: Pre-Release Gap";  'After stimulus down in full task, or during Page 2 (pre/during fade) in microstim
    'optoStages$[5] := "Saccade Release";
    
    'Do not allow selection of opto stages that are not available, do this one experiment type at a time
    'I was not sure whether we should move steps earlier or later if not allowed, and initially tried
    'moving the start stage later and the end stage earlier, but this did allow for illegal selections
    'to persist in some oddball cases, rather than chase those down I'm just going earlier/earlier.
    if item% = 0 or item% = laDlgOptoStartStage% or item% = laDlgOptoEndStage% or item% = laDlgExperimentType% or item% = laDlgTrainingStageSSGNG% or item% = laDlgTrainingStageSSMicro% or item% = laDlgTrainingStageDS2S1% or item% = laDlgTrainingStageDS2S2% then
        
        if DlgValue(laDlgExperimentType%) = 0 then
            'Before "3" opto is not allowed
            if DlgValue(laDlgTrainingStageSSGNG%) >= 3 then  'Do not allow pre-release gap or saccade release, it does not exist
                if DlgValue(laDlgOptoStartStage%) >= 4 then
                    DlgValue(laDlgOptoStartStage%,3);
                endif
                if DlgValue(laDlgOptoEndStage%) >= 4 then
                    DlgValue(laDlgOptoEndStage%,3);
                endif
            endif
        endif

        if DlgValue(laDlgExperimentType%) = 1 then
            'Before "2" opto is not allowed...but for 2 and 3 these are the same, so no IF necessary
            if DlgValue(laDlgOptoStartStage%) = 2 or DlgValue(laDlgOptoStartStage%) = 3 then
                DlgValue(laDlgOptoStartStage%,1);
            endif
            if DlgValue(laDlgOptoEndStage%) = 2 or DlgValue(laDlgOptoEndStage%) = 3 then
                DlgValue(laDlgOptoEndStage%,1);
            endif
        endif

        if DlgValue(laDlgExperimentType%) = 2 then
            'Gap is never allowed
            if DlgValue(laDlgOptoStartStage%) = 2 then
                DlgValue(laDlgOptoStartStage%,1);
            endif
            if DlgValue(laDlgOptoEndStage%) = 2 then
                DlgValue(laDlgOptoEndStage%,1);
            endif
            'Before "5" opto is not allowed
            if DlgValue(laDlgTrainingStageDS2S1%) = 5 then  'Do not allow pre-release gap, it does not exist
                if DlgValue(laDlgOptoStartStage%) = 4 then
                    DlgValue(laDlgOptoStartStage%,3);
                endif
                if DlgValue(laDlgOptoEndStage%) = 4 then
                    DlgValue(laDlgOptoEndStage%,3);
                endif
            endif
        endif

        if DlgValue(laDlgExperimentType%) = 3 then
            'Gap is never allowed
            if DlgValue(laDlgOptoStartStage%) = 2 then
                DlgValue(laDlgOptoStartStage%,1);
            endif
            if DlgValue(laDlgOptoEndStage%) = 2 then
                DlgValue(laDlgOptoEndStage%,1);
            endif
            'Before "5" opto is not allowed
            if DlgValue(laDlgTrainingStageDS2S2%) = 5 then  'Do not allow pre-release gap, it does not exist
                if DlgValue(laDlgOptoStartStage%) = 4 then
                    DlgValue(laDlgOptoStartStage%,3);
                endif
                if DlgValue(laDlgOptoEndStage%) = 4 then
                    DlgValue(laDlgOptoEndStage%,3);
                endif
            endif
        endif
    endif    
    
    'Do not allow opto end stage to be less than opto start stage
    'Do this AFTER restricting opto stages by experiment type to legal stages, I think this will result in fewer "big jumps"
    if item% = 0 or item% = laDlgOptoStartStage% or item% = laDlgOptoEndStage% then
        if DlgValue(laDlgOptoEndStage%) < DlgValue(laDlgOptoStartStage%) then
            DlgValue(laDlgOptoEndStage%,DlgValue(laDlgOptoStartStage%));  'Set end stage value to be equal to start stage value
        endif
    endif
    
    return status%;
end


proc UpdateLookAwayScriptDialogLabels(expt%,SSGNG%,SSMicro%,DS2S1%,DS2S2%,updateAll%)
    'This proc will update all of the "variable" text labels for the main dialog 
    'If updateAll% is 1 (e.g. called in the DialogChanged function) the proc will 
    'also run the DlgValue$ calls to change the text.  If updateAll% is 0 (e.g. called
    'in prep for dialog box creation) then it won't. 
    
    'To/Away JF labels
    if expt% = 1 then
        labelNRepeatsLoc1ToJF$ := "N Repeats Target 1";
        labelNRepeatsLoc1AwayJF$ :=  "N Repeats Target 2";
    else    
        labelNRepeatsLoc1ToJF$ := "N Repeats S1 in JAWS field";
        labelNRepeatsLoc1AwayJF$ :=  "N Repeats S1 away from JAWS field";
    endif;
    
    'Loc1/2 vs. Microstim labels
    if expt% = 1 then
        labelNRepeatsLoc1Only$ := "N Repeats Microstim";
        labelNRepeatsLoc1Loc2$ := "N Repeats No Microstim";
    else
        labelNRepeatsLoc1Only$ := "N Repeats S1 only";
        labelNRepeatsLoc1Loc2$ := "N Repeats S1 + S2";
    endif
    
    'ContrastFade labels
    labelContrastFade$ := "N/A";  'usually this is not used
    docase
    case expt% = 0 and SSGNG% = 0 then
        labelContrastFade$ := "Fade-in S1 Contrast (0-100)";
    case expt% = 0 and SSGNG% = 3 then
        labelContrastFade$ := "Fade-in Dist Contrast (0-100)";
    case expt% = 1 and SSMicro% = 2 then
        labelContrastFade$ := "Fade-out S1 Contrast (0-100)";
    case expt% = 2 and DS2S1% = 2 then
        labelContrastFade$ := "Fade-in S1 Dist Contrast (0-100)";
    case expt% = 3 and DS2S2% = 2 then
        labelContrastFade$ := "Fade-in Second S2 Contrast (0-100)";
    case expt% = 2 and DS2S1% = 5 then
        labelContrastFade$ := "Fade-out All Contrast (0-100)";
    case expt% = 3 and DS2S2% = 5 then
        labelContrastFade$ := "Fade-out All Contrast (0-100)";
    endcase
    
    'Secondary Location labels
    labelLoc1bXDeg$ := "X Loc, away from JF (deg)";  'Primarily this is location away from JF
    labelLoc1bYDeg$ := "Y Loc, away from JF (deg)";
    labelLoc2aXDeg$ := "N/A";  'Start with "unused"
    labelLoc2aYDeg$ := "N/A";
    labelLoc2bXDeg$ := "N/A";
    labelLoc2bYDeg$ := "N/A";
    if expt% = 0 and SSGNG% = 0 then  'Hijacking loc2bXDeg for a fixpt fade in this step only
        labelLoc2bXDeg$ := "Fade-out FixPt Contrast (0-100)";
    endif
    if expt% = 1 then  'IFs are going to be easier here, as should become obvious below
        labelLoc1bXDeg$ := "X Loc, Target 1 (deg)";  'Now allowing two different locations for the single-saccade target in the microstim task
        labelLoc1bYDeg$ := "Y Loc, Target 1 (deg)";  'Note that NEITHER location is at the JF, that is where the microstim saccade is expected to go
        labelLoc2aXDeg$ := "X Loc, Target 2 (deg)";  
        labelLoc2aYDeg$ := "Y Loc, Target 2 (deg)";
    endif
    if expt% = 2 and DS2S1% >= 1 then
        labelLoc2aXDeg$ := "X Loc, S2 (deg)";  
        labelLoc2aYDeg$ := "Y Loc, S2 (deg)";
    endif
    'if expt% = 2 and DS2S1% >= 2 then  'Change of plans, distractor location will be governed by JF-Away location
    '    labelLoc2bXDeg$ := "X Loc, S1 Dist (deg)";  
    '    labelLoc2bYDeg$ := "Y Loc, S1 Dist (deg)";
    'endif
    if expt% = 3 and DS2S2% >= 1 then
        labelLoc2aXDeg$ := "X Loc, S2 Target 1 (deg)";  
        labelLoc2aYDeg$ := "Y Loc, S2 Target 1 (deg)";
    endif
    if expt% = 3 and DS2S2% >= 2 then
        labelLoc2bXDeg$ := "X Loc, S2 Target 2 (deg)";  
        labelLoc2bYDeg$ := "Y Loc, S2 Target 2 (deg)";
    endif
    
    'Fixation Hold Time
    labelFixationDurationMin$ := "Pre-S1 Fix Hold, Min (s)";  'in most cases, this is the label
    labelFixationDurationVar$ := "Pre-S1 Fix Hold, Var (s)";
    docase
    case (expt% = 2 and DS2S1% = 3) or (expt% = 3 and DS2S2% = 3) then
        labelFixationDurationMin$ := "Pre-S1/S2 Fix Hold, Min (s)";  'but for these cases, they come up at the same time
        labelFixationDurationVar$ := "Pre-S1/S2 Fix Hold, Var (s)";    
    case (expt% = 2 and DS2S1% >= 4) or (expt% = 3 and DS2S2% >= 4) then
        labelFixationDurationMin$ := "Pre-S2 Fix Hold, Min (s)";  'and for these cases, the S2 comes up first
        labelFixationDurationVar$ := "Pre-S2 Fix Hold, Var (s)";
    endcase
    
    'Page 1 Duration - what is on Page 1?
    labelPage1DurationMin$ := "N/A";  'By default, nothing on page 1
    labelPage1DurationVar$ := "N/A";
    docase
    case expt% = 0 and SSGNG% = 0 then
        labelPage1DurationMin$ := "S1 Fade-in Dur, Min (s)";
        labelPage1DurationVar$ := "S1 Fade-in Dur, Var (s)";
    case expt% = 0 and SSGNG% >= 1 then
        labelPage1DurationMin$ := "S1 Dur, Min (s)";  'S1 on page 1
        labelPage1DurationVar$ := "S1 Dur, Var (s)";
    case expt% = 1 and SSMicro% = 0 then
        labelPage1DurationMin$ := "S1 Dur to Release, Min (s)";
        labelPage1DurationVar$ := "S1 Dur to Release, Var (s)";
    case expt% = 1 and (SSMicro% = 1 or SSMicro% = 2) then
        labelPage1DurationMin$ := "S1 Dur Init, Min (s)";
        labelPage1DurationVar$ := "S1 Dur Init, Var (s)";
    case expt% = 1 and SSMicro% = 3 then
        labelPage1DurationMin$ := "S1 Dur, Min (s)";  'S1 on page 1
        labelPage1DurationVar$ := "S1 Dur, Var (s)";
    case expt% = 2 and DS2S1% = 0 then
        labelPage1DurationMin$ := "S1 Dur to Release, Min (s)";
        labelPage1DurationVar$ := "S1 Dur to Release, Var (s)";    
    case expt% = 2 and DS2S1% = 1 then
        labelPage1DurationMin$ := "S1-targ Dur to Release 1, Min (s)";  'S1-target on page 1
        labelPage1DurationVar$ := "S1-targ Dur to Release 1, Var (s)";
    case expt% = 2 and DS2S1% = 2 then
        labelPage1DurationMin$ := "S1-targ+S1-dist Dur to Release 1, Min (s)";  'S1-target/S1-dist on page 1
        labelPage1DurationVar$ := "S1-targ+S1-dist Dur to Release 1, Var (s)";
    case expt% = 2 and DS2S1% = 3 then
        labelPage1DurationMin$ := "All Stims Dur to Release, Min (s)";
        labelPage1DurationVar$ := "All Stims Dur to Release, Var (s)";    
    case expt% = 2 and DS2S1% >= 4 then
        labelPage1DurationMin$ := "S2 Dur, Min (s)";  'S2 on page 1
        labelPage1DurationVar$ := "S2 Dur, Var (s)";
    case expt% = 3 and DS2S2% = 0 then
        labelPage1DurationMin$ := "S1 Dur to Release, Min (s)";
        labelPage1DurationVar$ := "S1 Dur to Release, Var (s)";    
    case expt% = 3 and (DS2S2% = 1 or DS2S2% = 2) then
        labelPage1DurationMin$ := "S1 Dur to Release 1, Min (s)";  'S1 on page 1
        labelPage1DurationVar$ := "S1 Dur to Release 1, Var (s)";
    case expt% = 3 and DS2S2% = 3 then
        labelPage1DurationMin$ := "All Stims Dur to Release 1, Min (s)";
        labelPage1DurationVar$ := "All Stims Dur to Release 1, Var (s)";    
    case expt% = 3 and DS2S2% >= 4 then
        labelPage1DurationMin$ := "S2-targ+S2-dist Dur, Min (s)";  'S2-targ/S2-dist on page 1
        labelPage1DurationVar$ := "S2-targ+S2-dist Dur, Var (s)";
    endcase
    
    'Page 2 Duration - what is on Page 2?
    labelPage2DurationMin$ := "N/A";  'By default, nothing on page 2
    labelPage2DurationVar$ := "N/A";
    docase
    case expt% = 0 and SSGNG% <= 1 then
        labelPage2DurationMin$ := "S2 Dur and Saccade Window, Min (s)";
        labelPage2DurationVar$ := "S2 Dur and Saccade Window, Var (s)";
    case expt% = 0 and SSGNG% >= 2 then
        labelPage2DurationMin$ := "Gap Duration, Min (s)";  'Gap on page 2
        labelPage2DurationVar$ := "Gap Duration, Var (s)";
    case expt% = 1 and SSMicro% = 1 then
        labelPage2DurationMin$ := "S1 Dur to Microstim, Min (s)";
        labelPage2DurationVar$ := "S1 Dur to Microstim, Var (s)";
    case expt% = 1 and SSMicro% = 2 then
        labelPage2DurationMin$ := "S1-fade Dur to Microstim, Min (s)";
        labelPage2DurationVar$ := "S1-fade Dur to Microstim, Var (s)";
    case expt% = 2 and DS2S1% = 1 then
        labelPage2DurationMin$ := "S1+S2 Dur to Release 2, Min (s)";
        labelPage2DurationVar$ := "S1+S2 Dur to Release 2, Var (s)";
    case expt% = 2 and DS2S1% = 2 then
        labelPage2DurationMin$ := "S1+S2+S1-dist-fade Dur to Release 2, Min (s)";
        labelPage2DurationVar$ := "S1+S2+S1-dist-fade Dur to Release 2, Var (s)";
    case expt% = 2 and DS2S1% = 4 then
        labelPage2DurationMin$ := "All Stims Dur to Release, Min (s)";
        labelPage2DurationVar$ := "All Stims Dur to Release, Var (s)";        
    case expt% = 2 and DS2S1% = 5 then
        labelPage2DurationMin$ := "Full Stimulus Dur to Fade, Min (s)";  'Full stimulus on page 2
        labelPage2DurationVar$ := "Full Stimulus Dur to Fade, Var (s)";
    case expt% = 2 and DS2S1% = 6 then
        labelPage2DurationMin$ := "Full Stimulus Dur, Min (s)";  'Full stimulus on page 2
        labelPage2DurationVar$ := "Full Stimulus Dur, Var (s)";    
    case expt% = 3 and DS2S2% = 1 then
        labelPage2DurationMin$ := "S1+S2 Dur to Release 2, Min (s)";
        labelPage2DurationVar$ := "S1+S2 Dur to Release 2, Var (s)";
    case expt% = 3 and DS2S2% = 2 then
        labelPage2DurationMin$ := "S1+S2+S2-dist-fade Dur to Release 2, Min (s)";
        labelPage2DurationVar$ := "S1+S2+S2-dist-fade Dur to Release 2, Var (s)";
    case expt% = 3 and DS2S2% = 4 then
        labelPage2DurationMin$ := "All Stims Dur to Release, Min (s)";
        labelPage2DurationVar$ := "All Stims Dur to Release, Var (s)";     
    case expt% = 3 and DS2S2% = 5 then
        labelPage2DurationMin$ := "Full Stimulus Dur to Fade, Min (s)";  'Full stimulus on page 2
        labelPage2DurationVar$ := "Full Stimulus Dur to Fade, Var (s)";  
    case expt% = 3 and DS2S2% = 6 then
        labelPage2DurationMin$ := "Full Stimulus Dur, Min (s)";  'Full stimulus on page 2
        labelPage2DurationVar$ := "Full Stimulus Dur, Var (s)";        
    endcase
    
    
    'Page 3 Duration - what is on Page 3?
    labelPage3DurationMin$ := "N/A";  'By default, nothing on page 2
    labelPage3DurationVar$ := "N/A";
    docase
    case expt% = 0 and SSGNG% >= 2 then
        labelPage3DurationMin$ := "S2 Dur and Saccade Window, Min (s)";
        labelPage3DurationVar$ := "S2 Dur and Saccade Window, Var (s)"; 
    case expt% = 2 and DS2S1% = 5 then
        labelPage3DurationMin$ := "Faded Stimulus Dur to Release, Min (s)";  'Faded stimulus on page 3
        labelPage3DurationVar$ := "Faded Stimulus Dur to Release, Var (s)";
    case expt% = 3 and DS2S2% = 5 then
        labelPage2DurationMin$ := "Faded Stimulus Dur to Release, Min (s)";  'Faded stimulus on page 2
        labelPage2DurationVar$ := "Faded Stimulus Dur to Release, Var (s)"; 
    endcase

    
    
    'Last page duration - what is on saccade release (gap with no stim) page?
    labelSaccadeReleaseDelayMin$ := "N/A";  'By default, there is no gap, only exists on the final (no-train) version of each expt
    labelSaccadeReleaseDelayVar$ := "N/A";
    'labelSaccadeReleaseDelayMin$ := "Full Stim Dur to Release, Min (s)";  'Best default is full stimulus on final page
    'labelSaccadeReleaseDelayVar$ := "Full Stim Dur to Release, Var (s)";
    docase
    'case expt% = 0 and SSGNG% = 4 then        'This option is not available anymore, we are NOT saccading to a blank
    '    labelSaccadeReleaseDelayMin$ := "Gap to Release (Stim Off), Min (s)";
    '    labelSaccadeReleaseDelayVar$ := "Gap to Release (Stim Off), Var (s)";
    case expt% = 1 and SSMicro% = 3 then        
        labelSaccadeReleaseDelayMin$ := "Gap to Microstim (Stim Off), Min (s)";
        labelSaccadeReleaseDelayVar$ := "Gap to Microstim (Stim Off), Var (s)";
    case expt% = 2 and DS2S1% = 6 then        
        labelSaccadeReleaseDelayMin$ := "Gap to Release (Stim Off), Min (s)";
        labelSaccadeReleaseDelayVar$ := "Gap to Release (Stim Off), Var (s)";
    case expt% = 3 and DS2S2% = 6 then        
        labelSaccadeReleaseDelayMin$ := "Gap to Release (Stim Off), Min (s)";
        labelSaccadeReleaseDelayVar$ := "Gap to Release (Stim Off), Var (s)";          
    endcase
    
    if updateAll% = 1 then
        DlgValue$(hNRepeatsLoc1Only%,labelNRepeatsLoc1Only$);
        DlgValue$(hNRepeatsLoc1Loc2%,labelNRepeatsLoc1Loc2$);
        DlgValue$(hNRepeatsLoc1ToJF%,labelNRepeatsLoc1ToJF$);
        DlgValue$(hNRepeatsLoc1AwayJF%,labelNRepeatsLoc1AwayJF$);
        DlgValue$(hContrastFade%,labelContrastFade$);
        DlgValue$(hLoc1bXDeg%,labelLoc1bXDeg$);
        DlgValue$(hLoc1bYDeg%,labelLoc1bYDeg$);
        DlgValue$(hLoc2aXDeg%,labelLoc2aXDeg$);
        DlgValue$(hLoc2aYDeg%,labelLoc2aYDeg$);
        DlgValue$(hLoc2bXDeg%,labelLoc2bXDeg$);
        DlgValue$(hLoc2bYDeg%,labelLoc2bYDeg$);
        DlgValue$(hFixationDurationMin%,labelFixationDurationMin$);
        DlgValue$(hFixationDurationVar%,labelFixationDurationVar$);
        DlgValue$(hPage1DurationMin%,labelPage1DurationMin$);
        DlgValue$(hPage1DurationVar%,labelPage1DurationVar$);
        DlgValue$(hPage2DurationMin%,labelPage2DurationMin$);
        DlgValue$(hPage2DurationVar%,labelPage2DurationVar$);
        DlgValue$(hPage3DurationMin%,labelPage3DurationMin$);
        DlgValue$(hPage3DurationVar%,labelPage3DurationVar$);
        DlgValue$(hSaccadeReleaseDelayMin%,labelSaccadeReleaseDelayMin$);
        DlgValue$(hSaccadeReleaseDelayVar%,labelSaccadeReleaseDelayVar$);
    endif
    
    
end


proc UpdateLookAwayScriptDialogEnable(v1,v2,v3,v4,v5,v6,v7,v8,v9,v10,v11,v12,v13)
    'There are exactly 20 dialog elements that can be turned on and off
    'Actually!  So many of these come in pairs that it makes more sense to combine them
    'This is convenient as (I think there still is) a limit of 20 arguments than can be passed to a proc
    'Since this would be a complete mess in the dialog changed function we will do it here, a bit easier
    'The order of the arguments here will be:
    '
    '1  NRepeatsUseJAWS%
    '1  NRepeatsNoJAWS%
    '2  NRepeatsLoc1Only%
    '2  NRepeatsLoc1Loc2%
    '3  ContrastFade%
    
    '4  Loc1bXDeg%
    '4  Loc1bYDeg%
    '5  Loc2aXDeg%
    '5  Loc2aYDeg%
    '6  Loc2bXDeg%  - can be independently turned on with a 2
    '6  Loc2bYDeg%
    
    '7  Page2DurationMin%    'Page 1 is now definitely used in every case, in a slight but appropriate change of logic
    '7  Page2DurationVar%
    '8  Page3DurationMin%
    '8  Page3DurationVar%
    '9  SaccadeReleaseDelayMin%
    '9  SaccadeReleaseDelayVar%
    
    '10  Sacc2AcqTime%
    '10  Sacc2HoldTime%
    '11 **OptoStartStage%
    '11 **OptoEndStage%
    '11 OptoVoltageOut%
    '11 PJawsRewardInit%
    '12 PSmallRewardSaccade1%
    
    '13 Sacc1AcqTime% (but not hold)  Added for GNG when it was realized that Page2/3 duration governed this (fixpt doesn't come down)
    
    'Each of these will have its enable setting done for both the dialog element (add "laDlg" to front)
    'and the text label (add "h" to front) except the two starred elements, which are drop-down lists
    'and do not have text labels.
    
    DlgEnable(v1,laDlgNRepeatsUseJAWS%);
    DlgEnable(v1,hNRepeatsUseJAWS%);
    DlgEnable(v1,laDlgNRepeatsNoJAWS%);
    DlgEnable(v1,hNRepeatsNoJAWS%);
    
    DlgEnable(v2,laDlgNRepeatsLoc1Only%);
    DlgEnable(v2,hNRepeatsLoc1Only%);
    DlgEnable(v2,laDlgNRepeatsLoc1Loc2%);
    DlgEnable(v2,hNRepeatsLoc1Loc2%);
    
    DlgEnable(v3,laDlgContrastFade%);
    DlgEnable(v3,hContrastFade%);
    
    DlgEnable(v4,laDlgLoc1bXDeg%);
    DlgEnable(v4,hLoc1bXDeg%);
    DlgEnable(v4,laDlgLoc1bYDeg%);
    DlgEnable(v4,hLoc1bYDeg%);
    
    DlgEnable(v5,laDlgLoc2aXDeg%);
    DlgEnable(v5,hLoc2aXDeg%);
    DlgEnable(v5,laDlgLoc2aYDeg%);
    DlgEnable(v5,hLoc2aYDeg%);
    
    if v6 = 2 then
        DlgEnable(1,laDlgLoc2bXDeg%);
        DlgEnable(1,hLoc2bXDeg%);
        DlgEnable(0,laDlgLoc2bYDeg%);
        DlgEnable(0,hLoc2bYDeg%);
    else
        DlgEnable(v6,laDlgLoc2bXDeg%);
        DlgEnable(v6,hLoc2bXDeg%);
        DlgEnable(v6,laDlgLoc2bYDeg%);
        DlgEnable(v6,hLoc2bYDeg%);
    endif
    
    
    DlgEnable(v7,laDlgPage2DurationMin%);
    DlgEnable(v7,hPage2DurationMin%);
    DlgEnable(v7,laDlgPage2DurationVar%);
    DlgEnable(v7,hPage2DurationVar%);
    
    DlgEnable(v8,laDlgPage3DurationMin%);
    DlgEnable(v8,hPage3DurationMin%);
    DlgEnable(v8,laDlgPage3DurationVar%);
    DlgEnable(v8,hPage3DurationVar%);
    
    DlgEnable(v9,laDlgSaccadeReleaseDelayMin%);
    DlgEnable(v9,hSaccadeReleaseDelayMin%);
    DlgEnable(v9,laDlgSaccadeReleaseDelayVar%);
    DlgEnable(v9,hSaccadeReleaseDelayVar%);
    
    DlgEnable(v10,laDlgSacc2AcqTime%);
    DlgEnable(v10,hSacc2AcqTime%);
    DlgEnable(v10,laDlgSacc2HoldTime%);
    DlgEnable(v10,hSacc2HoldTime%);
    
    DlgEnable(v11,laDlgOptoStartStage%);
    DlgEnable(v11,laDlgOptoEndStage%);
    DlgEnable(v11,laDlgOptoVoltageOut%);
    DlgEnable(v11,hOptoVoltageOut%);
    DlgEnable(v11,laDlgPJawsRewardInit%);
    DlgEnable(v11,hPJawsRewardInit%);
    
    DlgEnable(v12,laDlgPSmallRewardSaccade1%);
    DlgEnable(v12,hPSmallRewardSaccade1%);    
    
    DlgEnable(v13,laDlgSacc1AcqTime%);
    DlgEnable(v13,hSacc1AcqTime%);
    
end






proc StartSetExptVariables(expt%,SSGNG%,SSMicro%,DS2S1%,DS2S2%)
    'This proc will update all of the experiment-specific variables based on values from the main dialog 
    
    'Do we do opto?
    laDoOpto% := 0;
    if laNRepeatsUseJAWS% > 0 then  'if this is 0, then no JAWS
        docase  'just making it a bit easier than one long IF line
        case laExperimentType% = 0 then
            if laTrainingStageSSGNG% >= 3 then  'OK, we're doing opto!
                laDoOpto% := 1;
            endif
        case laExperimentType% = 1 then
            if laTrainingStageSSMicro% >= 2 then  'OK, we're doing opto!
                laDoOpto% := 1;
            endif
        case laExperimentType% = 2 then
            if laTrainingStageDS2S1% >= 5 then  'OK, we're doing opto!
                laDoOpto% := 1;
            endif
        case laExperimentType% = 3 then
            if laTrainingStageDS2S2% >= 5 then  'OK, we're doing opto!
                laDoOpto% := 1;
            endif
        endcase
    endif
    
    
    'Opto on and off state
    
    'optoStages$[0] := "Fix: Pre-Stim";  'Holding fixation before Page 1
    'optoStages$[1] := "Fix: Guide Stim";  'During page 1
    'optoStages$[2] := "Fix: S1-S2 Gap (GNG only)";  'During Page 2, training step 3-4, GNG only
    'optoStages$[3] := "Fix: Initiating Stim";  'During Page 2 in double-saccade, Page 3 in GNG, not allowed for microstim
    'optoStages$[4] := "Fix: Pre-Release Gap";  'After stimulus down in full task, or during Page 2 (pre/during fade) in microstim
    'optoStages$[5] := "Saccade Release";
    
    optoOnState% := 0;  'By default, Opto will be off
    optoOffState% := 0;
    if laDoOpto% = 1 then  'Don't bother checking these values if we're not doing opto!
        'Any experiment/stage combination that is not allowed should be restricted at the level of the dialog box, so we should not have to check here
        docase  'Note that any ambiguity in TrainingStage is already encoded in the ExperimentType/OptoStage combo, so checking TrainingStage would be redundant here
        case laOptoStartStage% = 0 then  'For "0" this is always stateHoldFixation%
            optoOnState% := stateHoldFixation%;
        case laOptoStartStage% = 1 then  'For "1" this is always stateWaitThroughPage1%
            optoOnState% := stateWaitThroughPage1%;
        case laOptoStartStage% = 2 and laExperimentType% = 0 then  'For "2" this is always stateWaitThroughPage2%
            optoOnState% := stateWaitThroughPage2%; 
        case laOptoStartStage% = 3 and laExperimentType% = 0 then  'This is stateWaitThroughPage3%
            optoOnState% := stateWaitThroughPage3%;   
        case laOptoStartStage% = 3 and laExperimentType% >= 2 then  'This is stateWaitThroughPage2%
            optoOnState% := stateWaitThroughPage2%; 
        case laOptoStartStage% = 4 and laExperimentType% = 1 then  'This is stateWaitThroughPage2%
            optoOnState% := stateWaitThroughPage2%;    
        case laOptoStartStage% = 4 and laExperimentType% <> 1 then  'This is stateWaitForSaccadeRelease%
            optoOnState% := stateWaitForSaccadeRelease%;   
        case laOptoStartStage% = 5 then  'For "5" this is always stateWaitSaccade1%
            optoOnState% := stateWaitSaccade1%;
        endcase
        
        docase
        case laOptoEndStage% = 0 then  'For "0" this is always stateHoldFixation%
            optoOffState% := stateHoldFixation%;
        case laOptoEndStage% = 1 then  'For "1" this is always stateWaitThroughPage1%
            optoOffState% := stateWaitThroughPage1%;
        case laOptoEndStage% = 2 and laExperimentType% = 0 then  'For "2" this is always stateWaitThroughPage2%
            optoOffState% := stateWaitThroughPage2%; 
        case laOptoEndStage% = 3 and laExperimentType% = 0 then  'This is stateWaitThroughPage3%
            optoOffState% := stateWaitThroughPage3%;
        case laOptoEndStage% = 3 and laExperimentType% >= 2 then  'This is stateWaitThroughPage2%
            optoOffState% := stateWaitThroughPage2%;
        case laOptoEndStage% = 4 and laExperimentType% = 1 then  'This is stateWaitThroughPage2%
            optoOffState% := stateWaitThroughPage2%;    
        case laOptoEndStage% = 4 and laExperimentType% <> 1 then  'This is stateWaitForSaccadeRelease%
            optoOffState% := stateWaitForSaccadeRelease%;    
        case laOptoEndStage% = 5 then  'For "5" this is always stateWaitSaccade1%
            optoOffState% := stateWaitSaccade1%;         
        endcase
    endif
    
    
    'Do we do microstim?
    laDoMicro% := 0;
    if laNRepeatsLoc1Only% > 0 and laExperimentType% = 1 and laTrainingStageSSMicro% >= 1 then
        laDoMicro% := 1;
    endif
    
    
    'Note that for these variables, we DON'T count the final blank as a page, the logic in the idle loop works on that assumption
    laTrialFinalPage% := 0;
    laFixDownAfterPage% := 0;  'Note that this is a bit weird, there are cases (full exp) where the fix does not come down until after the pre-release gap...not even sure this variable will be used??
    docase
    case laExperimentType% = 0 then
        docase
        case laTrainingStageSSGNG% = 0 then
            laTrialFinalPage% := 2;
            'laFixDownAfterPage% := 1;
            laFixDownAfterPage% := -1;  'In the GNG task (no saccade to blank location) we don't actually take the fixation point down
        case laTrainingStageSSGNG% = 1 then
            laTrialFinalPage% := 2; 
            'laFixDownAfterPage% := 2;
            laFixDownAfterPage% := -1;
        else 
            laTrialFinalPage% := 3; 
            'laFixDownAfterPage% := 3; 
            laFixDownAfterPage% := -1;            
        endcase
    case laExperimentType% = 1 then
        if laTrainingStageSSMicro% = 0 or laTrainingStageSSMicro% = 3 then
            laTrialFinalPage% := 1;
            laFixDownAfterPage% := 1;
        else
            laTrialFinalPage% := 2;
            laFixDownAfterPage% := 2;
        endif
    case laExperimentType% = 2 then
        docase
        case laTrainingStageDS2S1% = 0 or laTrainingStageDS2S1% = 3 then
            laTrialFinalPage% := 1;
            laFixDownAfterPage% := 1;
        case laTrainingStageDS2S1% = 4 or laTrainingStageDS2S1% = 6 then
            laTrialFinalPage% := 2;
            laFixDownAfterPage% := 2;
        else  'Note that for stage==1, we will re-adjust this trial-by-trial in the idle loop
            laTrialFinalPage% := 3;
            laFixDownAfterPage% := 1;
        endcase
    case laExperimentType% = 3 then
        docase
        case laTrainingStageDS2S2% = 0 or laTrainingStageDS2S2% = 3 then
            laTrialFinalPage% := 1;
            laFixDownAfterPage% := 1;
        case laTrainingStageDS2S2% = 4 or laTrainingStageDS2S2% = 6 then
            laTrialFinalPage% := 2;
            laFixDownAfterPage% := 2;
        else  'Note that for stage==1, we will re-adjust this trial-by-trial in the idle loop
            laTrialFinalPage% := 3;
            laFixDownAfterPage% := 1;
        endcase    
    endcase
    
    
    'This variable keeps track of whether the animal is being asked to make a second saccade
    '(of course, any saccade generated by a miscrostim does not count here, only voluntary saccades)
    laDoTwoSaccades% := 0;
    if laExperimentType% = 2 and laTrainingStageDS2S1% >= 2 then
        laDoTwoSaccades% := 1;
    endif
    if laExperimentType% = 3 and laTrainingStageDS2S2% >= 2 then
        laDoTwoSaccades% := 1;
    endif
    
    
    'This variable is set to 1 for the "final" (i.e. non-training) stage only, because for all experiments
    'the final stage involves having trained the animal to saccade to an absent target
    laSaccadeToBlank% := 0;
    'if laExperimentType% = 0 and laTrainingStageSSGNG% = 4 then  'No saccade to blank in GNG conception now
    '    laSaccadeToBlank% := 1;
    'endif
    if laExperimentType% = 1 and laTrainingStageSSMicro% = 3 then
        laSaccadeToBlank% := 1;
    endif
    if laExperimentType% = 2 and laTrainingStageDS2S1% = 6 then
        laSaccadeToBlank% := 1;
    endif
    if laExperimentType% = 3 and laTrainingStageDS2S2% = 6 then
        laSaccadeToBlank% := 1;
    endif
    
    
end







''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Stop%()
	
    ToolbarSet(0,"");  'Disable idle process function
    ToolbarEnable(1,0);  'Make sure Start is disabled
    ToolbarEnable(2,0);  'Disable Stop Sampling
    ToolbarEnable(3,1);  'I guess allow Juice to be enabled, maybe the animal is just sitting there
    ToolbarEnable(4,1);  'Enable Quit so we can close out
    
    'If the eyetracker is recording an output file, stop recording and close the file
    if RecordEyeTrackerOutputFile% = 1 then
        SafeSampleKey("w");  'Stop recording
        yield(0.1);
        SafeSampleKey("i");  'Close the file
        SafeSampleKey("Z");  'zero the DIGLOWs
    endif
    
	' Tell stim app to shut down
	SafeSampleKey("Q");
	Yield(.1);
	SampleStop();
	ProgKill(StimHandle%);
	while ProgStatus(StimHandle%) > 0 do
		Yield();
	wend
    
    'turn off opto just in case it might be on (it shouldn't, but...)
    if laDoOpto% = 1 then
        SafeSampleKey("o");
    endif;
    
	WriteParameterFile();
    
    '	ProgRun(bin$ + "\\ClearTrigger",0);
    
	' Increment daily totals and save them
	TotalTrials% += nTrialsStarted%;
	TotalRewards% += nTrialsSuccess%;
	SaveDailyTotals();

    return 1; 'stay in toolbar

end;


'''''Quit'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Used to hard-quit from toolbar. This will close data files without saving!!! 
' It is important that this function be disabled once sampling is started!!!

func Quit%()
    'If the eyetracker is recording an output file, stop recording and close the file
    if RecordEyeTrackerOutputFile% = 1 then
        SafeSampleKey("w");  'Stop recording
        yield(0.1);
        SafeSampleKey("i");  'Close the file
        SafeSampleKey("Z");  'zero the DIGLOWs
    endif
    
	FileClose(-1,-1);
	return 0;
end;


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Small reward can be used for training

func RewardSmall%(pReward)
    if pReward >= Rand() then
        'Check juicer type and deliver reward
        if JuicerType% = 1 then  'open-high juicer, dispense based on ms
            DeliverRewardMS(laHitsPerSmallReward%*laMSPerSmallRewardHit%);
        else
            if JuicerType% = 2 then  'open-low juicer, dispense based on number of hits
                DeliverRewardNum%(laHitsPerSmallReward%);
            endif;
        endif;	
    endif
    
	return 1;
end;



'''''WriteParameterFile''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc WriteParameterFile()    
    
    var parFileName$;
    var parFileBase$;
    var parHandle%;
    var ind%;
    var loc1a%;
    var loc1b%;
    var loc2a%;
    var loc2b%;
    var gr$;

    ' get filename for parfile (data file + "par" extension) and open it
    View(DataWindow%);
    parFileBase$ := FileName$(1) + FileName$(2) + FileName$(3) + FileName$(4);
    parFileName$ := parFileBase$ + ".par";
    PrintLog("par filename is " + parFileName$ + "\n");
    parHandle% := FileOpen(parFileName$, 8, 1);
    
    ' write general info - eye coil gains, dist to screen
    Print("Parameters for %s\n\n", parFileBase$);
    
    Print("General information\n");
    Print("-------------------\n\n");
    Print("Distance to screen (MM)    : %s\n", GetDistanceToScreenMM$());
    Print("Eye coil software gain (X) : %f\n", DegreesPerVoltX);
    Print("Eye coil software gain (Y) : %f\n", DegreesPerVoltY);
    Print("Eye coil offset, V (X)     : %f\n", XVoltOffset);
    Print("Eye coil offset, V (Y)     : %f\n", YVoltOffset);
    Print("Eye coil sampling freq (Hz): %d\n", EyeCoilSamplingFrequency%);
    Print("Number of electrodes       : %d\n", NumberOfElectrodes%);
    Print("Reward size (ms)           : %d\n", GetJuiceRewardMS%());

    ' write fixpoint parameters
    Print("\nFixation point\n");
    Print("-------------------\n\n");
    Print("Window radius              : %f\n", WindowRadius);
    Print("Position (x, degrees)      : %f\n", FixationX);
    Print("Position (y, degrees)      : %f\n", FixationY);
    Print("Diameter (degrees)         : %f\n", FixationDiameter);
    Print("Color                      : %s\n", FixationColor$);
    
    ' write stimulus parameters
    ind% := max(laLocsPresent%);  'Get index of maximum value of stimuli present
    ind% := laLocsPresent%[ind%];  'Just get the value
    DecodeLocsPresent(ind%,loc1a%,loc1b%,loc2a%,loc2b%);
    
    gr$ := GetGratingParameters$("Stimulus");
    Print("\nStimulus Parameters\n");
    Print("-------------------\n\n");
    Print("Grating Parameters         : %s\n", gr$);
    
    Print("\nStimulus Locations\n");
    Print("-------------------\n\n");
    if loc1a% = 1 then
        Print("S1a X Location             : %f\n",laLoc1aXDeg);
        Print("S1a Y Location             : %f\n",laLoc1aYDeg);
    endif
    if loc1b% = 1 then
        Print("S1b X Location             : %f\n",laLoc1bXDeg);
        Print("S1b Y Location             : %f\n",laLoc1bYDeg);
    endif
    if loc2a% = 1 then
        Print("S2a X Location             : %f\n",laLoc2aXDeg);
        Print("S2a Y Location             : %f\n",laLoc2aYDeg);
    endif
    if loc2b% = 1 then
        Print("S2b X Location             : %f\n",laLoc2bXDeg);
        Print("S2b Y Location             : %f\n",laLoc2bYDeg);
    endif
    
    Print("\nExperimental parameters\n");
    Print("-------------------------\n\n");

    Print("Always Looking             : %d\n", laAlwaysLooking%);
    Print("Experiment Type            : %s\n", laExperimentLabel$[laExperimentType%]);
    docase
    case laExperimentType% = 0 then
        Print("Training Stage             : %s\n", trainingStageOptsSSGNG$[laTrainingStageSSGNG%]);
    case laExperimentType% = 1 then
        Print("Training Stage             : %s\n", trainingStageOptsSSMicro$[laTrainingStageSSMicro%]);
    case laExperimentType% = 2 then
        Print("Training Stage             : %s\n", trainingStageOptsDS2S1$[laTrainingStageDS2S1%]);
    case laExperimentType% = 3 then
        Print("Training Stage             : %s\n", trainingStageOptsDS2S2$[laTrainingStageDS2S2%]);        
    endcase
    Print("N Trials                   : %d\n", nTrials%);
    Print("N Repeats                  : %d\n", laNRepeats%);
    Print("N Repeats To JAWS Field    : %d\n", laNRepeatsLoc1ToJF%);
    Print("N Repeats Away JAWS Field  : %d\n", laNRepeatsLoc1AwayJF%);
    Print("N Repeats Use JAWS         : %d\n", laNRepeatsUseJAWS%);
    Print("N Repeats No JAWS          : %d\n", laNRepeatsNoJAWS%);
    if laExperimentType% = 1 then
        Print("N Repeats Use Micro        : %d\n", laNRepeatsLoc1Only%);
        Print("N Repeats No Micro         : %d\n", laNRepeatsLoc1Loc2%);
    else
        Print("N Repeats One Saccade      : %d\n", laNRepeatsLoc1Only%);
        Print("N Repeats Two Saccades     : %d\n", laNRepeatsLoc1Loc2%);
    endif
    Print("Fade-in/Fade-out Contrast  : %d\n", laContrastFade%);
    if laExperimentType% = 0 and laTrainingStageSSGNG% = 0 then
        Print("Fade-out Fixation Contrast : %d\n", laLoc2bXDeg);  'Should be able to print out float as an integer
    endif
    Print("Answer Window Diam (deg)   : %f\n", laAnswerWindowDiameter);
    Print("Fix Acquisition Time (s)   : %f\n", laFixAcquisitionTime);
    Print("Fixation Time min (s)      : %f\n", laFixationDurationMin);
    Print("Fixation Time var (s)      : %f\n", laFixationDurationVar);
    Print("Page 1 Duration min (s)    : %f\n", laPage1DurationMin);
    Print("Page 1 Duration var (s)    : %f\n", laPage1DurationVar);
    Print("Page 2 Duration min (s)    : %f\n", laPage2DurationMin);
    Print("Page 2 Duration var (s)    : %f\n", laPage2DurationVar);
    Print("Page 3 Duration min (s)    : %f\n", laPage3DurationMin);
    Print("Page 3 Duration var (s)    : %f\n", laPage3DurationVar);
    Print("Sacc Release Delay min (s) : %f\n", laSaccadeReleaseDelayMin);
    Print("Sacc Release Delay var (s) : %f\n", laSaccadeReleaseDelayVar);
    Print("Sacc 1 Acq Time (s)        : %f\n", laSacc1AcqTime);
    Print("Sacc 1 Hold Time (s)       : %f\n", laSacc1HoldTime);
    Print("Sacc 2 Acq Time (s)        : %f\n", laSacc2AcqTime);
    Print("Sacc 2 Hold Time (s)       : %f\n", laSacc2HoldTime);
    Print("Inter-trial Time (s)       : %f\n", laInterTrialTime);
    Print("Abort Penalty Time (s)     : %f\n", laAbortPenaltyTime);
    
    Print("Small Reward Dur (ms)      : %d\n", laMSPerSmallRewardHit%);
    Print("P Small Reward On Hold     : %f\n", laPSmallRewardHoldTarg);
    Print("P Small Reward On Sacc 1   : %f\n", laPSmallRewardSaccade1);
    Print("P Initial JAWS Reward      : %f\n", laPJawsRewardInit);
   
    if laDoOpto% = 1 then
        Print("\nOptogenetics parameters\n");
        Print("-------------------------\n\n");
        Print("Opto Voltage Out           : %f\n", laOptoVoltageOut);
        Print("Opto Start Stage           : %s\n", optoStages$[laOptoStartStage%]);
        Print("Opto End Stage             : %s\n", optoStages$[laOptoEndStage%]);
    endif;    
    
    
    ' close parfile
    FileClose(0);
    
end;




func CalcNumTrials%(NR%,JAWS%,NoJAWS%,Towards%,Away%,Loc1%,Loc1Loc2%,expt%,SSGNG%,SSMicro%,DS2S1%,DS2S2%);
    
    'This function will calculate the total number of trials requested by the LookAway task dialog
    var n%;
    var uTrials% := 0;
    var J%;  '(J)AWS - How many "Jaws" and "NoJaws" trials
    var L%;  '(L)ocation - How many "towards" and "away" from JAWS field 
    var S%;  '(S)accade or (S)tim - How many 1 or 2 saccade trials, or how many microstim/no microstim 
    J% := JAWS% + NoJAWS%;
    L% := Towards% + Away%;
    S% := Loc1% + Loc1Loc2%;
    
    'IN ADDITION!!!  This function is the most logical and easy place to set variables that are not in use
    'for a particular experiment, just in case there is an inappropriate value from a disabled box in the
    'dialog.  As a verification, I checked and we CAN pass a global value in as a different variable name 
    'then change the global directly inside the function (even if the function is nested as a subfunction) 
    'and retain the changed value of the global variable globally.    
    
    docase
    case expt% = 0 then  'Single-Saccade GNG experiment
        docase
        case SSGNG% >= 3 then
            uTrials% := 4 * L% * J%;
        case SSGNG% = 0 then  
            uTrials% :=  2* L%;
            laNRepeatsUseJAWS% := 0;  'No JAWS opto trials in this experiment
            laNRepeatsNoJAWS% := 1;  'So only one "repeat" of No-JAWS
        else
            uTrials% :=  4 * L%;
            laNRepeatsUseJAWS% := 0;  'No JAWS opto trials in this experiment
            laNRepeatsNoJAWS% := 1;  'So only one "repeat" of No-JAWS
        endcase
        laNRepeatsLoc1Loc2% := 0;  'No two-saccade trials in this experiment
        laNRepeatsLoc1Only% := 1;  'So only one "repeat" of one-saccade trials
    case expt% = 1 then  'Single-Saccade Microstim experiment
        docase
        case SSMicro% = 0 then
            uTrials% :=  L%;
            laNRepeatsLoc1Loc2% := 0;  'No microstim trials in this experiment
            laNRepeatsLoc1Only% := 1;  'So only one "repeat" of no-microstim trials
            laNRepeatsUseJAWS% := 0;  'No JAWS opto trials in this experiment
            laNRepeatsNoJAWS% := 1;  'So only one "repeat" of No-JAWS
        case SSMicro% = 1 then
            uTrials% :=  L% * S%;
            laNRepeatsUseJAWS% := 0;  'No JAWS opto trials in this experiment
            laNRepeatsNoJAWS% := 1;  'So only one "repeat" of No-JAWS
        else
            uTrials% :=  L% * S% * J%;
        endcase
    case expt% = 2 then  'Double-Saccade experiment with two S1 stimuli...Both Double-Saccade experiments have the same pattern (at least for now!)
        docase
        case DS2S1% = 1 then
            uTrials% :=  L% * S%;
            laNRepeatsUseJAWS% := 0;  'No JAWS opto trials in this experiment
            laNRepeatsNoJAWS% := 1;  'So only one "repeat" of No-JAWS
        case DS2S1% >= 5 then
            uTrials% :=  2 * L% * J%;  'S1 must have orientation counterbalance
            laNRepeatsLoc1Loc2% := 0;  'No two-saccade trials in this experiment
            laNRepeatsLoc1Only% := 1;  'So only one "repeat" of one-saccade trials
        case DS2S1% >= 3 and DS2S1% <= 4  then  'The "<= 4" is really not necessary because the CASE above will trip first, but just in case things get moved around
            uTrials% :=  2 * L%;  'S1 must have orientation counterbalance
            laNRepeatsLoc1Loc2% := 0;  'No two-saccade trials in this experiment
            laNRepeatsLoc1Only% := 1;  'So only one "repeat" of one-saccade trials
            laNRepeatsUseJAWS% := 0;  'No JAWS opto trials in this experiment
            laNRepeatsNoJAWS% := 1;  'So only one "repeat" of No-JAWS
        else  'Stages 0 and 2
            uTrials% :=  L%; 
            laNRepeatsLoc1Loc2% := 0;  'No two-saccade trials in this experiment
            laNRepeatsLoc1Only% := 1;  'So only one "repeat" of one-saccade trials
            laNRepeatsUseJAWS% := 0;  'No JAWS opto trials in this experiment
            laNRepeatsNoJAWS% := 1;  'So only one "repeat" of No-JAWS
        endcase
    case expt% = 3 then  'Double-Saccade experiment with two S2 stimuli
        docase
        case DS2S2% = 0 then
            uTrials% :=  L%;
            laNRepeatsLoc1Loc2% := 0;  'No two-saccade trials in this experiment
            laNRepeatsLoc1Only% := 1;  'So only one "repeat" of one-saccade trials
            laNRepeatsUseJAWS% := 0;  'No JAWS opto trials in this experiment
            laNRepeatsNoJAWS% := 1;  'So only one "repeat" of No-JAWS
        case DS2S2% = 1 then  'Probably too complicated to have two S2 locations, especially when frequently there is no second saccade.
            uTrials% :=  L% * S%;
            laNRepeatsUseJAWS% := 0;  'No JAWS opto trials in this experiment
            laNRepeatsNoJAWS% := 1;  'So only one "repeat" of No-JAWS
        case DS2S2% >= 3 then   'For all of the following conditions, we actually have to locate the target S2 in one of two locations
            uTrials% :=  2 * L% * J%;  'Orientation counterbalance
            laNRepeatsLoc1Loc2% := 0;  'No two-saccade trials in this experiment
            laNRepeatsLoc1Only% := 1;  'So only one "repeat" of one-saccade trials
        else  'stage = 2
            uTrials% :=  L%;  'No orientation counterbalance while fading in
            laNRepeatsLoc1Loc2% := 0;  'No two-saccade trials in this experiment
            laNRepeatsLoc1Only% := 1;  'So only one "repeat" of one-saccade trials
            laNRepeatsUseJAWS% := 0;  'No JAWS opto trials in this experiment
            laNRepeatsNoJAWS% := 1;  'So only one "repeat" of No-JAWS
        endcase    
    endcase
    
    
    'Get total number of trials
    n% := NR% * uTrials%;
    
    return n%;
end





'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' DrawTarget
' 
' Draws locations of stimuli in xy window (iDraw%==1) or blanks it (0). 
' iPage% indicates which page to draw (1-3), c% is a 0-based trial count for indexing
proc DrawTarget(iDraw%,iPage%,c%)
    var pageLocs%; 
    
	if iDraw% > 0 then
        'Get the locations present on this page
        docase
        case iPage% = 1 then
            pageLocs% := laPage1Draw%[c%];
        case iPage% = 2 then
            pageLocs% := laPage2Draw%[c%];
        case iPage% = 3 then
            pageLocs% := laPage3Draw%[c%];        
        endcase
        
        'Response windows for each stimulus are drawn above in InitializeWindows so we don't have to do it every single time
        
        if pageLocs% >= 8 then  'Loc2B is present
            if laTarget2Loc%[c%] = 11 then  'Loc2B is a target
                View(XYWindow%).XYColour(iLoc2bChannel%,16);  'red
            else
                View(XYWindow%).XYColour(iLoc2bChannel%,13);  'blue
            endif
            View(XYWindow%).XYAddData(iLoc2bChannel%, Loc2bWindowX[], Loc2bWindowY[]);
            pageLocs% := pageLocs% - 8;
        else  'Loc2B is absent, make sure it is down
            View(XYWindow%).XYDelete(iLoc2bChannel%);
        endif
        
        if pageLocs% >= 4 then  'Loc2A is present
            if laTarget2Loc%[c%] = 10 then  'Loc2A is a target
                View(XYWindow%).XYColour(iLoc2aChannel%,16);  'red
            else
                View(XYWindow%).XYColour(iLoc2aChannel%,13);  'blue
            endif
            View(XYWindow%).XYAddData(iLoc2aChannel%, Loc2aWindowX[], Loc2aWindowY[]);
            pageLocs% := pageLocs% - 4;
        else  'Loc2a is absent, make sure it is down
            View(XYWindow%).XYDelete(iLoc2aChannel%);
        endif
        
        if pageLocs% >= 2 then  'Loc1B is present
            if laTarget1Loc%[c%] = 2 then  'Loc1B is a target
                View(XYWindow%).XYColour(iLoc1bChannel%,16);  'red
            else
                View(XYWindow%).XYColour(iLoc1bChannel%,13);  'blue
            endif
            View(XYWindow%).XYAddData(iLoc1bChannel%, Loc1bWindowX[], Loc1bWindowY[]);
            pageLocs% := pageLocs% - 2;
        else  'Loc1B is absent, make sure it is down
            View(XYWindow%).XYDelete(iLoc1bChannel%);
        endif
        
        if pageLocs% = 1 then  'Loc1A is present
            if laTarget1Loc%[c%] = 1 then  'Loc1A is a target
                View(XYWindow%).XYColour(iLoc1aChannel%,16);  'red
            else
                View(XYWindow%).XYColour(iLoc1aChannel%,13);  'blue
            endif
            View(XYWindow%).XYAddData(iLoc1aChannel%, Loc1aWindowX[], Loc1aWindowY[]);
        else  'Loc1A is absent, make sure it is down
            View(XYWindow%).XYDelete(iLoc1aChannel%);
        endif

        
    else 
		' erase all stimuli from xy view
		View(XYWindow%).XYDelete(iLoc1aChannel%);
		View(XYWindow%).XYDelete(iLoc1bChannel%);
        View(XYWindow%).XYDelete(iLoc2aChannel%);
		View(XYWindow%).XYDelete(iLoc2bChannel%);
	endif

end;


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' DrawFix
' 
' Draws fixpt in xy window (iDraw%==1) or blanks it (0). 
proc DrawFix(iDraw%)

	if iDraw% > 0 then

		' Draw stimulus in xy window
		View(XYWindow%).XYAddData(iFixChannel%, FixationX, FixationY);
	
		' draw fixation window
		ArrConst(windowX[], FixWindowX[]);
		ArrAdd(windowX[], FixationX);
		ArrConst(windowY[], FixWindowY[]);
		ArrAdd(windowY[], FixationY);

		View(XYWindow%).XYAddData(iFixWindowChannel%, windowX[], windowY[]);		
	else 
		' erase the stim and the window from xy view
		View(XYWindow%).XYDelete(iFixChannel%);
		View(XYWindow%).XYDelete(iFixWindowChannel%);
	endif

end;




''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func LookingFixation%(EyePosX,EyePosY)
	'Determine if the eye position is within the fixation window
    
    'laAlwaysLooking% is the true test mode.
    if laAlwaysLooking% = 1 then 
        return 1; 
    endif;
 
	if (Pow(EyePosX-FixationX,2) + Pow(EyePosY-FixationY,2)) <= Pow(WindowRadius,2) then 
        return 1; 
    else 
        return 0; 
    endif
end;



''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'We really need to have separate Target1 and Target2 functions...just to deal easily with
'the laAlwaysLooking% variable.  Effectively we would have to tell this function whether
'we were looking for saccade 1 or saccade 2 anyway so either we have to have a kind of
'cryptic argument or just two functions.
func LookingTarget1%(EyePosX,EyePosY,c%)
    'c% is trial count
    
    'Determine if the eye position is within any present saccade-1 window.  
    'Return 1 for Loc1a window (typically JAWS field)
    'Return 2 for Loc1b window (typically opposite JF)
    'Return 0 for no window
    'Return 0/1/2 based on which window contains the target if laAlwaysLooking% = 1, 0 for no-go trial

    var retVal%:=0;
    var loc1a%;
    var loc1b%;
    var loc2a%;  'For now we are not even evaluating loc2a/b but we need the argument for DecodeLocsPresent()
    var loc2b%;

    'laAlwaysLooking% is the true test mode.
    'return target value in cases where we are not monitoring fixation for testing
    if laAlwaysLooking% = 1 then 
        retVal% := laTarget1Loc%[c%];
        return retVal%; 
    endif;
    
    'laLoc1aXDeg   'primary, is typically for JAWS field
    'laLoc1aYDeg
    'laLoc1bXDeg   'secondary, is typically for opposite location
    'laLoc1bYDeg   
    
    'Determine which locations to evaluate
    DecodeLocsPresent(laLocsPresent%[c%],loc1a%,loc1b%,loc2a%,loc2b%);
    
    
    docase  'Here we are just going to use WindowRadius as the radius of a circular window
    case loc1a% = 1 and (Pow(EyePosX-laLoc1aXDeg,2) + Pow(EyePosY-laLoc1aYDeg,2)) <= Pow(WindowRadius,2) then 
        retVal% := 1;
    case loc1b% = 1 and (Pow(EyePosX-laLoc1bXDeg,2) + Pow(EyePosY-laLoc1bYDeg,2)) <= Pow(WindowRadius,2) then
        retVal% := 2;
    else 'Could be looking at fixation, could be looking at an S2 location, could be looking out into space...just not looking at one of the S1 locations
        retVal% := 0; 
    endcase

    return retVal%;
    
end;



''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func LookingTarget2%(EyePosX,EyePosY,c%)
    'c% is trial count
    
    'Determine if the eye position is within any present saccade-1 window. 
    'Return 1 for Loc1 target window (indicates first fixation not lost!)
    'Return 10 for Loc2a window
    'Return 11 for Loc2b window 
    'Return 0 for no window
    'Return 0/10/11 based on which window contains the target if laAlwaysLooking% = 1, 0 for no-second-saccade trial

    var retVal%:=0;
    var targ1%;
    var loc1a%;
    var loc1b%;
    var loc2a%;
    var loc2b%;

    'laAlwaysLooking% is the true test mode.
    'return target value in cases where we are not monitoring fixation for testing
    if laAlwaysLooking% = 1 then 
        retVal% := laTarget2Loc%[c%];
        return retVal%; 
    endif;
    
    'Determine which location should be the current saccade1 target, this is where eye position is expected to be
    targ1% := laTarget1Loc%[c%];
    
    'laLoc2aXDeg   'primary, is typically for first S2
    'laLoc2aYDeg
    'laLoc2bXDeg   'secondary, is typically for second S2
    'laLoc2bYDeg   
    
    'Determine which locations to evaluate
    DecodeLocsPresent(laLocsPresent%[c%],loc1a%,loc1b%,loc2a%,loc2b%);

    
    docase  'Here we are just going to use WindowRadius as the radius of a circular window
    case loc2a% = 1 and (Pow(EyePosX-laLoc2aXDeg,2) + Pow(EyePosY-laLoc2aYDeg,2)) <= Pow(WindowRadius,2) then 
        retVal% := 10;
    case loc2b% = 1 and (Pow(EyePosX-laLoc2bXDeg,2) + Pow(EyePosY-laLoc2bYDeg,2)) <= Pow(WindowRadius,2) then
        retVal% := 11;
    case targ1% = 1 and (Pow(EyePosX-laLoc1aXDeg,2) + Pow(EyePosY-laLoc1aYDeg,2)) <= Pow(WindowRadius,2) then
        retVal% := 1;
    case targ1% = 2 and (Pow(EyePosX-laLoc1bXDeg,2) + Pow(EyePosY-laLoc1bYDeg,2)) <= Pow(WindowRadius,2) then
        retVal% := 1;    
    else 
        retVal% := 0; 
    endcase

    return retVal%;
    
end;





''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func LookingTarget2JAWS%(EyePosX,EyePosY,c%)
    'c% is trial count
    
    'Determine if the eye position is within any present saccade-1 window. 
    'Return 1 for Loc1 target window (indicates first fixation not lost!)
    'Return 10 for Loc2a window
    'Return 11 for Loc2b window 
    'Return 0 for no window
    'Return 0/10/11 based on which window contains the target if laAlwaysLooking% = 1, 0 for no-second-saccade trial
    
    'For the JAWS version, we need to take into account that we believe the animal may compensate for a saccade-1
    'with reduced/absent efference copy by overshooting saccade-2.  For the moment we don't have any idea how much
    'undershoot the animal's internal representation might have.  The safest bet is up to 100% undershoot, but if
    'we have this be a variable we can change it easily enough if this is going too far.  We should get a reasonable
    'idea of the actual location of the saccade-2 on JAWS trials before too long.  For the saccade-2 targets, we will
    'use a rectangle for simplicity.  The difficulty that remains here is that the rectangle will likely be oriented, 
    'because the location of saccade-1 will likely not be on either the X or the Y axis. 
    
    'General strategy:
    'Using location of target-1 (T1), determine location of saccade-2 under compensation ("T2C")
    'Find distance between actual T2 and T2C as hypotenuse (H) of right triangle
    'Find midpoint
    'Determine rotation angle
    'Set minor axis "radius" as +/- WindowRadius
    'Set major axis "radius" as +/- (H/2 + WindowRadius)
    'Rotate actual, X,Y relative to midpoint as (0,0)
    'Check rotated point is within minor and major radii
    
    'OK, let's belay that order.  The rotated rectangle is clever, but we run into issues such as "what if 
    'the JAWS is somehow only affecting the X efference copy while the Y efference copy is intact?"  Safer
    'to just make a big unrotated rectangle and then if in that rectangle, reward at the same rate as reward
    'in the non-JAWS condition (if reward rate is greater in JAWS condition, otherwise just use it).  Reward
    'fiddling would happen somewhere else, not here.
    
    var retVal%:=0;
    var targ1%;
    var targ1X;
    var targ1Y;
    var targ2%;
    var loc1a%;  'Loc1 not encoded here, but DecodeLocsPresent() needs these variables
    var loc1b%;
    var loc2a%;
    var loc2aX;
    var loc2aXmin;
    var loc2aXmax;
    var loc2aY;
    var loc2aYmin;
    var loc2aYmax;
    var loc2b%;
    var loc2bX;
    var loc2bXmin;
    var loc2bXmax;
    var loc2bY;
    var loc2bYmin;
    var loc2bYmax;
    var underProp := 1;  '0-1 variable giving the proportion of undershoot, we will expand the response window
                         'based on expected potential overshoot - this variable says how much
    
    
    'laAlwaysLooking% is the true test mode.
    'return target value in cases where we are not monitoring fixation for testing
    if laAlwaysLooking% = 1 then 
        retVal% := laTarget2Loc%[c%];
        return retVal%; 
    endif;
    
    'Determine which location should be the current saccade1 target, this is where eye position is expected to be
    targ1% := laTarget1Loc%[c%];
    
    'Get X,Y location of current target, in order to get to this function the animal *has* to saccade here
    if targ1% = 1 then
        targ1X := laLoc2aXDeg;
        targ1Y := laLoc2aYDeg;
    else
        targ1X := laLoc2bXDeg;
        targ1Y := laLoc2bYDeg;
    endif;
    
    'Determine which locations to evaluate
    DecodeLocsPresent(laLocsPresent%[c%],loc1a%,loc1b%,loc2a%,loc2b%);
    
    'Create "maximal" (i.e., not rotated) response windows for JAWS saccades to T2s
    if loc2a% = 1 then
        loc2aX := laLoc2aXDeg + targ1X*underProp;  'Expected saccade2 X (compensated) = actual X loc + compensation for assumed "failure" of saccade1
        loc2aY := laLoc2aYDeg + targ1Y*underProp;
        loc2aXmin := min(loc2aX-WindowRadius,laLoc2aXDeg-WindowRadius);
        loc2aXmax := max(loc2aX+WindowRadius,laLoc2aXDeg+WindowRadius);
        loc2aYmin := min(loc2aY-WindowRadius,laLoc2aYDeg-WindowRadius);
        loc2aYmax := max(loc2aY+WindowRadius,laLoc2aYDeg+WindowRadius);
    endif
    if loc2b% = 1 then
        loc2bX := laLoc2bXDeg + targ1X*underProp;  'Expected saccade2 X (compensated) = actual X loc + compensation for assumed "failure" of saccade1
        loc2bY := laLoc2bYDeg + targ1Y*underProp;
        loc2bXmin := min(loc2bX-WindowRadius,laLoc2bXDeg-WindowRadius);
        loc2bXmax := max(loc2bX+WindowRadius,laLoc2bXDeg+WindowRadius);
        loc2bYmin := min(loc2bY-WindowRadius,laLoc2bYDeg-WindowRadius);
        loc2bYmax := max(loc2bY+WindowRadius,laLoc2bYDeg+WindowRadius);
    endif
    
    'Determine which location should be the current saccade2 target, in case of overlap of response windows we will prefer the target
    targ2% := laTarget2Loc%[c%];
    
    
    docase  'For checking if gaze is at saccade-1 location, just use WindowRadius as the radius of a circular window
        'Check saccade-1 window first. If there is an overlap in saccade-1 and saccade-2 windows, assume no saccade if still in window 1
    case targ1% = 1 and (Pow(EyePosX-laLoc1aXDeg,2) + Pow(EyePosY-laLoc1aYDeg,2)) <= Pow(WindowRadius,2) then
        retVal% := 1;
    case targ1% = 2 and (Pow(EyePosX-laLoc1bXDeg,2) + Pow(EyePosY-laLoc1bYDeg,2)) <= Pow(WindowRadius,2) then
        retVal% := 1;  
        'If there's something at loc2a and it is the target (preferred), and the eye is in the window
    case loc2a% = 1 and targ2% = 10 and EyePosX>=loc2aXmin and EyePosX<=loc2aXmax and EyePosY>=loc2aYmin and EyePosY<=loc2aYmax then
        retVal% := 10;
        'If there's something at loc2b and it is the target (preferred), and the eye is in the window
    case loc2b% = 1 and targ2% = 11 and EyePosX>=loc2bXmin and EyePosX<=loc2bXmax and EyePosY>=loc2bYmin and EyePosY<=loc2bYmax then
        retVal% := 11;
        'If there's something at loc2a and it is not the target (non-preferred), and the eye is in the window
    case loc2a% = 1 and EyePosX>=loc2aXmin and EyePosX<=loc2aXmax and EyePosY>=loc2aYmin and EyePosY<=loc2aYmax then
        retVal% := 10;
        'If there's something at loc2b and it is not the target (non-preferred), and the eye is in the window
    case loc2b% = 1 and EyePosX>=loc2bXmin and EyePosX<=loc2bXmax and EyePosY>=loc2bYmin and EyePosY<=loc2bYmax then
        retVal% := 11;  
    else 
        retVal% := 0; 
    endcase

    return retVal%;
    
end;




'This is just a simple funciton that will allow us to quickly decode the binary-coded location values
proc DecodeLocsPresent(locsPresent%,&loc1a%,&loc1b%,&loc2a%,&loc2b%)
    if locsPresent% >= 8 then  'remove info about Loc2b
        loc2b% := 1;
        locsPresent% := locsPresent% - 8;
    else
        loc2b% := 0;
    endif
    if locsPresent% >= 4 then  'remove info about Loc2a
        loc2a% := 1;
        locsPresent% := locsPresent% - 4;
    else
        loc2a% := 0;
    endif
    if locsPresent% >= 2 then  'check for Loc1b
        loc1b% := 1;
        locsPresent% := locsPresent% - 2;
    else
        loc1b% := 0;
    endif
    if locsPresent% = 1 then  'check for Loc1a
        loc1a% := 1;
    else
        loc1a% := 0;
    endif
end





proc UpdateToolbarText()   'This is very simplistic but it seems fine
    var s$;
    
    s$ := Print$("nTrialsStarted=%d, Success=%d, Fail=%d, Abort=%d", nTrialsStarted%, nTrialsSuccess%, nTrialsFail%, nTrialsAbort%);
    ToolbarText(s$);
    return;
end