'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' Pursuit script START
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''


'Include Files

'#include "../util/ChannelUtilities.s2s"
'#include "../util/UsreyUtil.s2s"
'#include "../util/LogUtilities.s2s"      'redundant
'#include "../util/MiscUtilities.s2s"
'#include "UsreyDAQ.s2s"                  'redundant
'#include "UsreyFixationPoint.s2s"        'redundant

#include "../util/AllAlertUtilities.s2s"

' Overall script control vars
var Pause% := 0;


' Channel numbers and handles
var StimHandle%;			' handle for stimulus application
var DataWindow%;		
var XChannel%;
var YChannel%;
var iStimChannel%;

var FrameChannel%;
var FrameSlaveChannel%;
var StimChannel%;
var StimSlaveChannel%;
var ReadyChannel%;
var ReadySlaveChannel%;
var DigitalLaserChannel%;
var OptoCopyChannel%;
var SequencerPeriodMS;
var StimulatorChannel%;
var UtilityChannel%;
var TimingChannel%;
var FixationPointChannel%;

' XY window stuff
var XYWindow%;			' 
var iMonitorChannel%;	' channel number for monitor position display in xy window
var iStimWindowChannel%;

' Display stuff
var FixWindowX[36],FixWindowY[36];	' points for displaying fixation window in xy view
var windowX[36], windowY[36];
var purBackgroundColor$ := "gray";  'for right now, let's not even allow changing this...

' Wavemarks and continuous ports
var purNWavemarks% := 0;
var purWavemarkPorts%[64];
var purNContinuous% := 0;
var purContinuousPorts%[64];

' dummy vars
var iScript%;


var tNow:=0;		' latest time for which there are values recorded. Used in IdleProcessing
var tLast:=-1;		' last time we checked for a trigger. 
var xEye, yEye;		' eye positions
var tLastFixPtDisplayUpdate:=-1;	' last time view was updated
var vTrigger;		' set by NextTime to indicate trigger transition
var tStateStart:=-1;	' time that present state started. Used to measure wait time, fixation time, etc. 
var tPursuitStart;  'what time did pursuit start?  Cannot rely on tStateStart due to potential multiple-state paths
var tLastTrigger:=-1;	' last trigger time. New triggers have to be greater than this
var tTrigger:=-1;	' temp var for newly discovered trigger times
var tInterTrialTime := 0;	' Time spent waiting between trials (i.e. after screen is blank, but before image is presented)
var tRise, tFall;
var tKludge := 0.06;    ' Add to Fixation time to account for stim sequence. Ugly hack, admittedly, but one does what one must. 
var purSkipTimeOut%;
var eyeTrackerSampleRate := 1000;
    

' State Logic constants
const stateVSGWait%		       := 0;
const stateFixptUp%	           := 1;
const stateWaitForFixptUp%	   := 2;
const stateWaitForAcquisition% := 3;
const stateWaitForBlank%	   := 4;
const stateAcquisitionTO%	   := 5;
const stateWaitForStimMove%	   := 6;
const stateHoldPursuit%	       := 7;
const stateWaitForFixptOff%	   := 8;
const stateReward%		       := 9;
const stateWaitReward%		   := 10;
const stateTrialCompleted%     := 11;		
const stateInterTrialInterval% := 12;	
const statePursuitGrace%       := 13;
const stateIntermediateReward% := 14;

var iState% := stateVSGWait%;	' present state
var stateBegin% := 1;  'For fun, in this script let's keep track of whether it is the first time through a state, for logging purposes


var nTrialsStarted%:=0;
var nTrialsCompleted%:=0;
var nTrialsAborted% :=0;
var nIntermediateRewards%;
var intermediateRewardsGiven% := 0;


var tic;  'Set a tick value equal to the duration of one clock tick in seconds, used to prevent finding
          'the same "pulse" twice
var pulseFound%;
var tOpt;


' Reward variables
var purProbRewardEachPeriod;
var purRewardDurSec;
'purRewardDurSec := (GetJuiceRewardMS%()+20)/1000;  'Set reward duration up top.  If we have any reason to think this will change through the experiment, then set it say each idle loop
                                                   'I am paranoid and I'm adding another 20 ms following the reward.
const purMaxIntRews% := 20;
var purIntermediateRewardTime[purMaxIntRews%];



' Dialog box variables
var purNLeftRight%;
var purNUpDown%;
var purNRepeats%;
var purPursuitSpeed;
var purITI;
var purRandomProgression%;
var purAcquisitionTime;
var purAcquisitionTO;
var purPursuitWindowRadius;
var purGracePeriod;  
var purGracePeriodPoints%;     'How long is the grace period in points?   Used for excluding values in calibration
var purLRPoints%;              'How long is a left-right pursuit in points?
var purUDPoints%;              'How long is an up-down pursuit in points?
var purAlwaysLookingInd%;
var purAlwaysLooking%;
var purScreenMMX;  'we will assume that the 0,0 coordinate of fixation is at the center of the screen, and calculate the screen size from there
var purScreenMMY;
var purPctScreenUsed;
var purScreenXDeg;  'Defined as the distance from the center of the screen to the edge
var purScreenYDeg;
var purMinInterveningRewards%;
var purMaxInterveningRewards%;
var purMeanInterveningRewardInterval;
var purDoCalibrationRun%;
var purCalibrationAdvance%;

var purFixptMoving%;  'If 0, fixpt has not yet started moving.  If 1, fixpt is moving.  If 2, fixpt has stopped.  Note that currently 0/2 are not used differently, but maybe someday so I'm keeping it
var purNValues%;
const purMaxTrials% := 1000;  'like that's plenty
const purMaxXYLocs% := 20;  'Also should be plenty
var trialInd%;
var purPursuitDur[purMaxTrials%];
var purCurrentDur;
var purStartX[purMaxTrials%];
var purStartY[purMaxTrials%];
var purEndX[purMaxTrials%];
var purEndY[purMaxTrials%];
var purDirection[purMaxTrials%];
var purTrialOrder%[purMaxTrials%];
var purThisStartX;
var purThisStartY;
var purThisSpeed;
var purThisDir;

'Calibration variables
var purCalibrationNLeftRight% := 5;   'Set number of L/R for calibration, 5 should be best (should be odd so there is one on the x=0 axis)
var purCalibrationNUpDown% := 5;      'Set number of U/D for calibration, 5 should be best (should be odd so there is one on the y=0 axis)
var purCalibrationNRepeats% := 3;     'Set number of repeats for calibration, not sure if 3 is best
var purXMean[purCalibrationNUpDown%][purCalibrationNRepeats%*2];       'To hold the mean x value for each pursuit on the y-axis, both U-D and D-U
var purYMean[purCalibrationNLeftRight%][purCalibrationNRepeats%*2];    'To hold the mean y value for each pursuit on the x-axis, both L-R and R-L
var purXMeanNPoints%[purCalibrationNUpDown%][purCalibrationNRepeats%*2];       'To hold the number of points contributing to the means above
var purYMeanNPoints%[purCalibrationNLeftRight%][purCalibrationNRepeats%*2];    'etc.
var purFixptXPositionStatic[purCalibrationNUpDown%];        'Fixpt X location for y-axis pursuits, will be the "X" for linear regression
var purFixptYPositionStatic[purCalibrationNLeftRight%];     'Fixpt Y Location for x-axis pursuits, will be the "X" for linear regression
var purEyeXPositionStatic[purCalibrationNUpDown%];          'Eye X Location for y-axis pursuits, will be the "Y" for linear regression
var purEyeYPositionStatic[purCalibrationNLeftRight%];       'Eye Y Location for x-axis pursuits, will be the "Y" for linear regression
var purXorYIndex%;                                          'Index variable, for first dimension of purXMean[][], etc.
var purXMeanIndices%[purCalibrationNUpDown%];               'Set of indices, keeps track of how many of each x position have been run, for second dimension of purXMean[][], etc.
var purYMeanIndices%[purCalibrationNLeftRight%];            'etc., for Y
var purDoXMeanThisTrial%;                                   'If 1, do xMean on this trial, if 0, do yMean
var nValsDataReturned%;                                     'Need to know how many values we actually got, in case there's like a minor blip or something
var purCalNStDev% := 1;                                     'Where (in standard deviations) do we set the upper cutoff for accepted data?
var purMean;                                                'Temporary mean calculation
var purStDev;                                               'Temporary standard deviation calculation
var purNVal%;                                               'Temporary N Values kept
var VperDX;                                                 'Temporary value because our regression returns the reciprocal of what we want
var VperDY;                                                 'etc.
var Xr2;                                                    'R-squared value for the linear regression in X
var Yr2;                                                    'etc.
var calibrationCompleted%:=0;                               'Keep track of completion of calibration, don't calibrate twice in Stop%()


GetPursuitScriptParameters();  'We will just get these right off the bat


' Init logging
LogInit(1);

UseTwo1401s% := DoWeUseTwo1401s%();
GetPortsAndNumWMsWFs%(purNWavemarks%,purNContinuous%,purWavemarkPorts%[],purContinuousPorts%[]);



iScript% := PursuitScriptDialog%();


'halt;  'this is just so I can test out the dialog box but not go any farther...

if iScript% = 1 then
    LogInfo("Proceed with DAQ.");
else
	LogInfo("User cancel - exit gracefully\n");
	Halt;
endif;



' Assign channel numbers for eye X,Y and trigger. 
XChannel% := 25;
YChannel% := 26;
TimingChannel% := 38;
UtilityChannel% := 39;
ReadyChannel% := 40;
FrameChannel% := 41;
StimChannel% := 42;
FixationPointChannel% := 43;
ReadySlaveChannel% := 44;
FrameSlaveChannel% := 45;
StimSlaveChannel% := 46;
StimulatorChannel% := 47;
DigitalLaserChannel% := 48;  'is 32 on Acute tuning, but let's not shove it in the midst of other stuff
OptoCopyChannel% := 49;  'A  bunch of this stuff is unused, but just sitting here waiting

ExcludedChans%[0] := 25;  'XChannel is lowest non-electrode channel used by this function
ExcludedChans%[1] := 49;  'OptoCopyChannel% is highest non-electrode channel used by this function  


'If doing calibration...
if purDoCalibrationRun% = 1 then

    'Calculate number of sampled eye position points for L-R and U-D pursuits, as well as grace period
    purLRPoints% := eyeTrackerSampleRate*2*purScreenXDeg*purPctScreenUsed/(100*purPursuitSpeed);  'in seconds
    purUDPoints% := eyeTrackerSampleRate*2*purScreenYDeg*purPctScreenUsed/(100*purPursuitSpeed);
    purGracePeriodPoints% := eyeTrackerSampleRate*purGracePeriod/purPursuitSpeed;

    'Initialize variables to hold L-R and U-D eye position data
    var YData[purLRPoints%];
    var XData[purUDPoints%];

endif;

'If we are not linking the two 1401s together, just use the standard order of operations:
'1) create sampling configuration, 2) Initialize windows, 3) Initialize/run toolbar.
'However, if we are linking the 1401s we have to do this in a different order, because we have to open up the second
'instance of Spike 2 BEFORE setting up the sampling configuration/windows on the first instance.  Doing this in the
'wrong order results in a non-fatal error in the second Spike2 instance indicating that the file which is preparing
'to be recorded in the first instance cannot be accessed, despite no explicit attempt to access any such thing.
'Hence, for the dual-1401 setups, we first initialize the toolbar, which has a specialty button "Start Plexon".  StartPlexon%()
'launches the second instance and the associated script, and both scripts move forward independently to create their own
'sampling configuration, initialize their own windows and are ready to have sampling started.  Note well that sampling
'must be started on the POWER 1401/SLAVE 1401 (the second, non-dominant instance of Spike2) FIRST and on the 
'MICRO 1401/MASTER 1401 (the first,  dominant instance of Spike 2) SECOND.  Starting sampling on the Micro will run 
'the VSG program (Fixstim) which gives the sampling trigger and sets the experiment in motion.
if UseTwo1401s% = 0 then
    CreateSampleConfiguration();

    ' Get display windows ready
    InitializeWindows();
    
    ' Prepare the toolbar buttons
    InitializeToolbar();
    'Start%();  'HOLY FUCK NEVER DO THIS, I DID IT FOR TESTING THEN DIDN'T COMMENT IT OUT AND IF YOU DO THAT THEN YOU CAN'T RUN ANOTHER FIXSTIM BECAUSE IT SENDS ANOTHER COMMAND LINE ACCIDENTALLY -jj
else
    InitializeToolbar();
endif;



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' Pursuit script END
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''


'From here on out, it's just various necessary functions


' PursuitScriptDialog

func PursuitScriptDialog%()
	var i%;
	var iReturn%;
    var screenMMPerDegree;
    var pi := 3.141592653589793;  'There is a pre-defined constant "_pi", but only on 8.03 and beyond, explicitly defining pi for back-compatibility
    var fixtype$[3];
    
    fixtype$[0] := "Always Looking";
    fixtype$[1] := "Enforce Acquisition";
    fixtype$[2] := "Enforce Acq+Pursuit";
    
    GetPursuitScriptParameters();
    
'This might be useful for file-based pursuit schemes in the future if we decide to make them    
'    if purUseFile% = 0 then
'        if Len(purStimFile$) > 0 then
'            purDialogText$ := "Use FILE: " + purStimFile$;
'        else
'            purDialogText$ := "No File/Folder Selected";
'        endif
'    endif
    
        
    DlgCreate("Pursuit Parameters", 0, 0, 0, 0, -1, 1, 1);  'center dialog relative to screen and not to application window to eliminate cutting off the bottom of the dialog!
    DlgGroup("Stimulus", 1, 1, 50, 8);
    DlgInteger(1, "Number of L/R pursuits", 1, purMaxXYLocs%, 0, 2);
    DlgInteger(2, "Number of U/D pursuits", 1, purMaxXYLocs%, 0, 3);
    DlgInteger(3, "Number of repeats", 1, 100, 0, 4);
    DlgReal(4, "Speed, deg/s", 0.05, 100, 0, 5);
    DlgReal(5, "Intertrial Interval, s", 0.05, 100, 0, 6);
    DlgCheck(6, "Random Progression?", 0, 7);
    DlgCheck(7, "Do Calibration Run?", 0, 8);
    
    DlgGroup("Fixation", 1, 9, 50, 6);
    DlgReal(8, "Fixation Acquisition Time, s", 0.1, 100, 0, 10);
    DlgReal(9, "Acquisition Time Out, s", 0, 100, 0, 11);
    DlgReal(10, "Pursuit Window, deg", 0.1, 100, 0, 12);
    DlgReal(11, "Pursuit Start Grace Period, s", 0, 100, 0, 13);
    DlgList(12, "Fixation Enforcement: ", fixtype$, 3, 32, 14);
    
    DlgGroup("Screen", 1, 15, 50, 4);
    DlgReal(13, "Screen Width, mm", 10, 3000, 0, 16);
    DlgReal(14, "Screen Height, mm", 10, 3000, 0, 17);
    DlgReal(15, "Percent Screen Used, 0-100", 0.1, 100, 0, 18);
    
    DlgGroup("Intervening Rewards", 1, 19, 50, 4);
    DlgInteger(16, "Minimum Int Rewards", 0, 5, 0, 20);
    DlgInteger(17, "Maximum Int Rewards (0 for none)", 0, purMaxIntRews%, 0, 21);
    DlgReal(18, "Int Reward Interval, s", 0.1, 10, 0, 22);

    'This can be done from Config, looks like it was carried over from FreeViewer, which has different, within-stimulus requirements, not necessary here.
    'DlgGroup("Reward", 1, 18, 50, 2);
    'DlgReal(15, "Prob of reward each pursuit, 0-100", 0, 100, 0, 19);
     
    DlgAllow(0xffff, 0, PursuitScriptDialogChanged%);

    i%:=DlgShow(purNLeftRight%,purNUpDown%,purNRepeats%,purPursuitSpeed,purITI,purRandomProgression%,purDoCalibrationRun%,
    purAcquisitionTime,purAcquisitionTO,purPursuitWindowRadius,purGracePeriod,purAlwaysLookingInd%,
    purScreenMMX,purScreenMMY,purPctScreenUsed,purMinInterveningRewards%,purMaxInterveningRewards%,purMeanInterveningRewardInterval);
    

    
    if i% = 1 then
        
        if purMinInterveningRewards% > purMaxInterveningRewards% and purMaxInterveningRewards% > 0 then
            message("Min intervening rewards cannot be more than max!  Setting NO intervening rewards!");
            purMaxInterveningRewards% := 0;
        endif;
        
        
        if 2*(purNLeftRight%+purNUpDown%)*purNRepeats% > purMaxTrials% then
            message("Too Many Trials (" + Str$(2*(purNLeftRight%+purNUpDown%)*purNRepeats%) + ") Requested!  Max is " + Str$(purMaxTrials%) +"!  Quitting!");
            return 0
        endif;
        
		SavePursuitScriptParameters();
        'Calculate screen values in degrees here
        screenMMPerDegree := Val(GetDistanceToScreenMM$())*pi/180;  
        purScreenXDeg := (purScreenMMX/2)/screenMMPerDegree;  'we are defining purScreenX(Y)Deg as HALF the screen so it is the distance from center to the edge
        purScreenYDeg := (purScreenMMY/2)/screenMMPerDegree;
        
        purAlwaysLooking% := 2-purAlwaysLookingInd%;  '2 = always looking, 1 = enforce acquisition only, 0 = enforce acquisition and pursuit
                
        iReturn% := 1;  'set return value to success, otherwise we'll just quit.
        
	endif;

	return iReturn%;
end;



func PursuitScriptDialogChanged%(item%) 
    
    'If always looking, turn off all fixation variables - this misses some values set later, don't want to mess with it for now, not important
    docase
    case DlgValue(12) = 0 then
        DlgEnable(0,8);
        DlgEnable(0,9);
        DlgEnable(0,10);
        DlgEnable(0,11);
    case DlgValue(12) = 1 then
        DlgEnable(1,8);
        DlgEnable(1,9);
        DlgEnable(1,10);
        DlgEnable(0,11);
    case DlgValue(12) = 2 then
        DlgEnable(1,8);
        DlgEnable(1,9);
        DlgEnable(1,10);
        DlgEnable(1,11);
    endcase;
    
    'If doing calibration, set values for nX, nY, nRepeats
    if item% = 0 or item% = 7 then  'only check on first open, or if checkbox changes
        if DlgValue(7) = 1 then
            DlgEnable(0,1);  'Disable number of L/R
            DlgEnable(0,2);  'Disable number of U/D
            DlgEnable(0,3);  'Disable number of repeats
            DlgValue(1,purCalibrationNLeftRight%);   'Set number of L/R to default value for calibration
            DlgValue(2,purCalibrationNUpDown%);      'Set number of U/D to default value for calibration
            DlgValue(3,purCalibrationNRepeats%);     'Set number of repeats to default value for calibration
        else
            DlgEnable(1,1);  'Enable number of L/R
            DlgEnable(1,2);  'Enable number of U/D
            DlgEnable(1,3);  'Enable number of repeats
            DlgValue(1,purNLeftRight%);   'Reset number of L/R to most recent registry value
            DlgValue(2,purNUpDown%);      'Reset number of U/D to most recent registry value
            DlgValue(3,purNRepeats%);     'Reset number of repeats to most recent registry value
        endif
    endif
    
    return 1;
end


proc GetPursuitScriptParameters()
	var key$;
	key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Scripts\\Pursuit";   
    
    purNLeftRight% := GetIntRegistryValue%(key$, "NLeftRight", purNLeftRight%);
    purNUpDown% := GetIntRegistryValue%(key$, "NUpDown", purNUpDown%);
    purNRepeats% := GetIntRegistryValue%(key$, "NRepeats", purNRepeats%);
    purPursuitSpeed := GetFloatRegistryValue(key$, "PursuitSpeed", purPursuitSpeed);
    purITI := GetFloatRegistryValue(key$, "ITI", purITI);
    purRandomProgression% := GetIntRegistryValue%(key$, "RandomProgression", purRandomProgression%);
    purAcquisitionTime := GetFloatRegistryValue(key$, "AcquisitionTime", purAcquisitionTime);
    purAcquisitionTO := GetFloatRegistryValue(key$, "AcquisitionTO", purAcquisitionTO);
    purPursuitWindowRadius := GetFloatRegistryValue(key$, "PursuitWindowRadius", purPursuitWindowRadius);
    purGracePeriod := GetFloatRegistryValue(key$, "GracePeriod", purGracePeriod);
    purAlwaysLookingInd% := GetIntRegistryValue%(key$, "AlwaysLookingInd", purAlwaysLookingInd%);
    purScreenMMX := GetFloatRegistryValue(key$, "ScreenMMX", purScreenMMX);
    purScreenMMY := GetFloatRegistryValue(key$, "ScreenMMY", purScreenMMY);
    purPctScreenUsed := GetFloatRegistryValue(key$, "PctScreenUsed", purPctScreenUsed);
    purMinInterveningRewards% := GetIntRegistryValue%(key$, "MinInterveningRewards", purMinInterveningRewards%);
    purMaxInterveningRewards% := GetIntRegistryValue%(key$, "MaxInterveningRewards", purMaxInterveningRewards%);
    purMeanInterveningRewardInterval := GetFloatRegistryValue(key$, "MeanInterveningRewardInterval", purMeanInterveningRewardInterval);
    purDoCalibrationRun% := GetIntRegistryValue%(key$, "DoCalibrationRun", purDoCalibrationRun%);
    
    
    
end;

proc SavePursuitScriptParameters()
	var key$;
	key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Scripts\\Pursuit";   
    
    'If we are doing a calibration run, do not save "hardcoded" calibration-run values to registry,
    'we can get these saved values back for non-calibration runs
    if purDoCalibrationRun% = 0 then
        SetIntRegistryValue(key$, "NLeftRight", purNLeftRight%);
        SetIntRegistryValue(key$, "NUpDown", purNUpDown%);
        SetIntRegistryValue(key$, "NRepeats", purNRepeats%);
    endif;
    SetFloatRegistryValue(key$, "PursuitSpeed", purPursuitSpeed);
    SetFloatRegistryValue(key$, "ITI", purITI);
    SetIntRegistryValue(key$, "RandomProgression", purRandomProgression%);
    SetFloatRegistryValue(key$, "AcquisitionTime", purAcquisitionTime);
    SetFloatRegistryValue(key$, "AcquisitionTO", purAcquisitionTO);
    SetFloatRegistryValue(key$, "PursuitWindowRadius", purPursuitWindowRadius);
    SetFloatRegistryValue(key$, "GracePeriod", purGracePeriod);
    SetIntRegistryValue(key$, "AlwaysLookingInd", purAlwaysLookingInd%);
    SetFloatRegistryValue(key$, "ScreenMMX", purScreenMMX);
    SetFloatRegistryValue(key$, "ScreenMMY", purScreenMMY);
    SetFloatRegistryValue(key$, "PctScreenUsed", purPctScreenUsed);
    SetIntRegistryValue(key$, "MinInterveningRewards", purMinInterveningRewards%);
    SetIntRegistryValue(key$, "MaxInterveningRewards", purMaxInterveningRewards%);
    SetFloatRegistryValue(key$, "MeanInterveningRewardInterval", purMeanInterveningRewardInterval);
    SetIntRegistryValue(key$, "DoCalibrationRun", purDoCalibrationRun%);
  
end;



''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc CreateSampleConfiguration()
	var i%;
    var temp1$;
    var temp2$;
    var od;
    var key$;
    var eof% := 1;
    
    var primaryTxt$;
    var secondaryTxt$;
    
    SetPrimarySecondaryTxt(primaryTxt$,secondaryTxt$);
    
	SampleClear(); 'Set standard sampling state
    SampleChannels(64);  '32 does not work, we need more!
	SampleAutoComment(0); 'Prompt for comment after sampling
	SampleAutoCommit(60); 'Seconds between each file commit
    
    ' Set path for new data files, and for those saved automatically
    FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 3);
    FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 1);
    
    
    key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Temp\\Filepref";
    
    DoSampleAutoName(key$,"pursuit","pur",primaryTxt$,secondaryTxt$);
       
    SampleAutoFile(1);  'Enable automatic file naming
    
    ' Text marks make extraction easier
    SampleTextMark(200);  'Channel 30 is textmark channel
    

	'----Event Channel recording definitions----
    
   	SampleEvent(FrameChannel%, 0, 2, 3600);
	SampleComment$(FrameChannel%,"Frame");
	SampleTitle$(FrameChannel%,"Frame");

	SampleEvent(ReadyChannel%, 1, 2, 3600); 'Trigger channel, level
	SampleComment$(ReadyChannel%,"Ready");
	SampleTitle$(ReadyChannel%,"Ready");
    
    SampleEvent(FixationPointChannel%, 2, 2, 3600); 'Trigger channel, level
	SampleComment$(FixationPointChannel%,"Fixpt");
	SampleTitle$(FixationPointChannel%,"Fixpt");
	
	SampleEvent(StimChannel%, 3, 2, 3600); 'Trigger channel, level
	SampleComment$(StimChannel%,"Stim");
	SampleTitle$(StimChannel%,"Stim");
    
    if UseTwo1401s% = 1 then
    
        SampleEvent(FrameSlaveChannel%, 4, 2, 3600);
        SampleComment$(FrameSlaveChannel%,"Frame-Slave");
        SampleTitle$(FrameSlaveChannel%,"Frame-Slave");
    
        SampleEvent(ReadySlaveChannel%, 5, 2, 3600); 'Trigger channel, level
        SampleComment$(ReadySlaveChannel%,"Ready-Slave");
        SampleTitle$(ReadySlaveChannel%,"Ready-Slave");
	
        SampleEvent(StimSlaveChannel%, 7, 2,3600); 'Trigger channel, level
        SampleComment$(StimSlaveChannel%,"Stim-Slave");
        SampleTitle$(StimSlaveChannel%,"Stim-Slave");
        
    endif
    
    SampleWaveform(XChannel%, GetEyeXPort%(), eyeTrackerSampleRate);
	SampleTitle$(XChannel%,EyeXPortLabel$);
	SampleWaveform(YChannel%, GetEyeYPort%(), eyeTrackerSampleRate);
	SampleTitle$(YChannel%,EyeYPortLabel$);
    
    if UtilityPort% > -1 then
        SampleWaveform(UtilityChannel%,UtilityPort%,30000);       
        SampleTitle$(UtilityChannel%,UtilityPortLabel$);
    endif;

    
    if UseTwo1401s% = 1 then
        SampleEvent(TimingChannel%, 6, 2, 3600); 'Trigger channel, level
        SampleComment$(TimingChannel%,"Handshake");
        SampleTitle$(TimingChannel%,"Hndshk");
    endif;

    
    
    '----Set up "spiking" Electrode Channels----
    SetUpElectrodeConfiguration(purNWavemarks%,ExcludedChans%[]);
    
        
	
    
	if UseTwo1401s% = 0 then
        SampleSequencer(script$ + "Tuning.pls");
    else
        SampleSequencer(script$ + "TuningSendTrigger.pls");
    endif;

	DoSampleOptimise();
	SampleMode(1); 'Continuous sampling
    
end;


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc InitializeWindows()
    var i%;
    var WindowStep;
    
    ' Make spike2 use all of monitor 1
    View(App()).Window(0, 0, 100, 100, 1);
    
	'Open the data sampling window
    DataWindow% := FileNew(0,4);
    if DataWindow% < 0 then
        PrintLog("FileNew Error: %s\n", Error$(DataWindow%));
    endif

	Window(0,48,50,95);
    XRange(0, 30);
	View(DataWindow%).WindowVisible(1);
            

	'Open an XY view to display eye position
	XYWindow% := FileNew(12);
	XRange(-30,30);
	YRange(-2,-30,30);
	XYDrawMode(0,5,0);
	WindowVisible(1);
	Window(0, 0, 50, 47);
	XYColour(1,16);
	XYSize(1,-1);


	'Calcuate the fixation window - now not done here because the fixation window moves, will calculate on the fly
'	var index%;
'	var twopi;
'	twopi := 2.0*4.0*ATan(1.0);
'	
'	for index% := 0 to 35 do
'		FixWindowX[index%] := FixationX + WindowRadius * Cos(index% * twopi/36.0);
'		FixWindowY[index%] := FixationY + WindowRadius * Sin(index% * twopi/36.0);
'	next;

	'Create a new channel in the XY view to display the fixation window
	iStimChannel% := XYSetChan(0);
	XYColour(2,13);
	XYDrawMode(2,2,1);
	XYJoin(2,1);
	'Draw the fixation window - nope, don't draw now as fixation obviously moves
	'XYAddData(2, FixWindowX[], FixWindowY[]);


	'Create a new channel in the XY view to show the monitor's location
	iMonitorChannel% := XYSetChan(0);
	XYColour(iMonitorChannel%,13);
	XYDrawMode(iMonitorChannel%,3,1);
	XYJoin(iMonitorChannel%,2);
    XYAddData(iMonitorChannel%,-purScreenXDeg,-purScreenYDeg);  'this uses the calculated screen size
	XYAddData(iMonitorChannel%,purScreenXDeg,-purScreenYDeg);
	XYAddData(iMonitorChannel%,purScreenXDeg,purScreenYDeg);
	XYAddData(iMonitorChannel%,-purScreenXDeg,purScreenYDeg);
    
    tic := View(DataWindow%).BinSize(ReadyChannel%);

end;





'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' InitializeToolbar - prepare toolbar buttons. Note that the idle processing function (ToolbarSet(0, blah, blah)) is 
' not set here. That's done when the user hits the start button.
'
proc InitializeToolbar()

	View(App(8)).WindowVisible(0);	'Hide the standard sample bar
	ToolbarVisible(1);
    if UseTwo1401s% = 1 then
        ToolbarSet(1,"StartPlexon",StartPlexon%);
    else
        ToolbarSet(1,"Sample start",Start%);
    endif;
	ToolbarSet(2,"Sample stop", Stop%);
	ToolbarSet(3,"Juice", Juice%);
	ToolbarSet(4,"Pause stimuli",PauseStimuli%);
	ToolbarSet(5,"Resume stimuli",ResumeStimuli%);
    ToolbarSet(6,"Select Wavemarks",SelectWavemarkDialog%);
	ToolbarSet(7,"Quit",Quit%);
	ToolbarEnable(2,0);
	ToolbarEnable(4,0);
	ToolbarEnable(5,0);
	Toolbar("Go",0x3ff);

end;


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func StartPlexon%()
    
    
    'Start the Power1401!  This is a bit cumbersome, and I'm not sure it's transferable, but it's a start, perhaps.
    var fp$;  'to hold current file path
    fp$ := SetPathToScriptDirectory$();
    
    'Must run this BEFORE the PROGRUN command, because both this sequence AND SetPlexon...
    'access the same directory, and this was causing conflicts because they were running
    'simultaneously.  Here, CreateSampleConfiguration is done accessing the directory before
    'SetPlexon... is started, and everything is kosher.
    CreateSampleConfiguration();    
    
    StartSecondInstanceOfSpike2();
    
    FilePathSet(fp$);  'change the file path back to what it was
    fp$ := FilePath$();  'read out to allow verification
    printlog("%s\n",fp$); 'and tell the world to verify
    
    ToolbarSet(1,"Start SECOND",Start%);  'change button 1 on the toolbar, this may not work
    

    ' Get display windows ready
    InitializeWindows();    
    
    return 1; 'stay in toolbar
    
end



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Start%()
	var cmdLine$;
    var Opener$;
    var ProgName$;
    var RemoteArg$:="";     'Extra arg needed if vsg is not on local machine...
    var XYArg$;
    var PursuitArg$;
    var BGColor$;
    var Dist2Screen$;
    var TriggerPort$;
    var Verbose$:=" -v ";  'For now, verbose is always on 
    var i%;
    var j%;
    var returnToPath$;  'this is where we start, we'll move back here after reading the folder
    var fh%;
    var startSecs := 5;
    var xmax;
    var ymax;
    var xlocs[purMaxXYLocs%]; 
    var ylocs[purMaxXYLocs%];
    var trash%[purMaxXYLocs%];
    var count%;
    var XYStr$;
    var purStr$;
    var purSpeedVec[purMaxTrials%];
    
    xmax := purScreenXDeg*purPctScreenUsed/100;  'Get x/y screen extent (from center) in degrees
    ymax := purScreenYDeg*purPctScreenUsed/100;
    GetRepeatedParameterProgression%(purNUpDown%, 1, xlocs[], trash%[], -xmax, xmax, 0, 0);  'Get locations of x/y starting points, spread across usable screen
    GetRepeatedParameterProgression%(purNLeftRight%, 1, ylocs[], trash%[], -ymax, ymax, 0, 0);
    
    'Repeat grab of X/Y positions if we are doing a calibration run, these (precisely-sized) variables will persist outside the Start%() function
    if purDoCalibrationRun% = 1 then
        GetRepeatedParameterProgression%(purNUpDown%, 1,purFixptXPositionStatic[], trash%[], -xmax, xmax, 0, 0);  'Get locations of x/y starting points, spread across usable screen
        GetRepeatedParameterProgression%(purNLeftRight%, 1, purFixptYPositionStatic[], trash%[], -ymax, ymax, 0, 0);
    endif
    
    count% := 0;
    for j% := 1 to purNRepeats% do
        'do left-to-right
        for i% := 0 to purNLeftRight%-1 do
            purStartX[count%] := -xmax;
            purEndX[count%] := xmax;
            purStartY[count%] := ylocs[i%];
            purEndY[count%] := ylocs[i%];
            purDirection[count%] := 0;  'note that if we do something more complicated we have to calculate this
            purPursuitDur[count%] := 2*xmax/purPursuitSpeed;  'in seconds
            count% += 1;
        next
        'do down-to-up
        for i% := 0 to purNUpDown%-1 do
            purStartX[count%] := xlocs[i%];
            purEndX[count%] := xlocs[i%];
            purStartY[count%] := -ymax;
            purEndY[count%] := ymax;
            purDirection[count%] := 90;  'note that if we do something more complicated we have to calculate this
            purPursuitDur[count%] := 2*ymax/purPursuitSpeed;  'in seconds
            count% += 1;
        next
        
        'do right-to-left
        for i% := 0 to purNLeftRight%-1 do
            purStartX[count%] := xmax;
            purEndX[count%] := -xmax;
            purStartY[count%] := ylocs[i%];
            purEndY[count%] := ylocs[i%];
            purDirection[count%] := 180;  'note that if we do something more complicated we have to calculate this
            purPursuitDur[count%] := 2*xmax/purPursuitSpeed;  'in seconds
            count% += 1;
        next
        'do up-to-down
        for i% := 0 to purNUpDown%-1 do
            purStartX[count%] := xlocs[i%];
            purEndX[count%] := xlocs[i%];
            purStartY[count%] := ymax;
            purEndY[count%] := -ymax;
            purDirection[count%] := 270;  'note that if we do something more complicated we have to calculate this
            purPursuitDur[count%] := 2*ymax/purPursuitSpeed;  'in seconds
            count% += 1;
        next
    next
    purNValues% := count%;
    'Initialize a vector of indices for trial order, will shuffle if requested
    for i% := 0 to purNValues%-1 do
        purTrialOrder%[i%] := i%;
    next
    'Shuffle trial order if requested, do this blockwise (do one whole LR, RL, UD, DU set before repeat)
    if purRandomProgression% = 1 then
        for i% := 1 to purNRepeats% do
            Shuffle%(purNValues%/purNRepeats%,purTrialOrder%[(i%-1)*purNValues%/purNRepeats%:purNValues%/purNRepeats%]);
        next
    endif;
    
    'Create a speed vector to make use of StringifyProgression3$(), for this script there is only one speed
    arrconst(purSpeedVec[],purPursuitSpeed);
    
    XYStr$ := StringifyProgression2$(purNValues%, purStartX[], PurStartY[], purTrialOrder%[]);
    purStr$ := StringifyProgression3$(purNValues%, purPursuitDur[], purDirection[], purSpeedVec[], purTrialOrder%[]);
    
'    printlog("X values are %f\n",xlocs[0:purNUpDown%]);
'    printlog("Y values are %f\n",ylocs[0:purNLeftRight%]);
'    for i% := 0 to purNValues%-1 do
'        printlog("Trial %d: StartXY = %0.2f,%0.2f, EndXY = %0.2f,%0.2f, Direction = %d, Duration = %0.2f\n",
'        i%+1,purStartX[purTrialOrder%[i%]],purStartY[purTrialOrder%[i%]],purEndX[purTrialOrder%[i%]],purEndY[purTrialOrder%[i%]],purDirection[purTrialOrder%[i%]],purPursuitDur[purTrialOrder%[i%]]);
'    next
'    
'    printlog("XYStr$ is %s\n",XYStr$);
'    printlog("purStr$ is %s\n",purStr$);
'    
'    halt;

    
    
	'start sampling
    if UseTwo1401s% = 1 then
        SampleStart(0);  'Set sampling to start immediately
        Yield(0.5);  'Wait half a second
        'Look for handshake, unless disabled
        while pulseFound% < 1 and startSecs > 0 and Dual1401IgnoreHandshake% = 0 do
            pulseFound% := View(DataWindow%).FindPulseUp%(TimingChannel%, 0, tRise, tFall);
            yield(0.1);
            startSecs := startSecs - 0.1;
        wend
        if startSecs <= 0 then
            message("Handshake not found in 5 seconds!  Quitting!");
            halt;
        endif
        'Send timing pulse
        SampleSeqVar(11,20);  'set for 20 ms pulse (Was not specified!  Two 1401s has been inactive for years and "T" may have been accidentally co-opted?)
        SafeSampleKey("T");
    else
    	SampleStart(0); 'Start sampling now
    endif;
    
    'Set sequencer variable 5, this value is appropriate for no rivalry
    SampleSeqVar(5, 0);
    
	' Set Sequencer Variable #3 based on juicer type 
    SetJuicerSequencerVariable%();
    ' Clear any trigger bits on digout lines.
    SafeSampleKey("0");
    
    SequencerPeriodMS := SampleSeqClock(1);  'Get the clock period of the sequencer, in MS, must do this after starting sampling
    
    
    'Begin building the command line argument
    Opener$ := "cmd /k " + bin$;
    
    ' Get remote args if needed
    if GetUseRemoteStimulus%() = 1 then
        RemoteArg$  := " " + GetRemoteStimulusIP$() + " " + GetRemoteStimulusPort$() + " fixstim ";
    endif;
        
    if GetUseRemoteStimulus%() = 1 then
        ProgName$ := "\\remote.exe "; 'set program name for one VSG
    else
        ProgName$ := "\\fixstim.exe "; 'set program name for one VSG
    endif;
        
    
    'Set background color
    BGColor$ := " -b " + purBackgroundColor$;
    
    'Set distance to screen
    Dist2Screen$ := " -d " + GetDistanceToScreenMM$();
    
    'Set trigger port
    TriggerPort$ := " -p 2 ";  'This one's hard-coded for now
    
    'Turn on verbose
    Verbose$ := " -v ";
    
    'FixationArg$ is automatically filled by #including UsreyFixationPoint.s2s
    
    
    'Get XY and pursuit arguments
    XYArg$ := " -y " + XYStr$;
    PursuitArg$ := " --pursuit " +  purStr$;  'two dashes!!!
    
    'Build command line
    cmdLine$ := Opener$ + ProgName$ + RemoteArg$ + Verbose$ + FixationArg$ + BGColor$ + Dist2Screen$ + TriggerPort$ + XYArg$ + PursuitArg$;  

    printlog("%s\n",cmdLine$);
    
    ' Initial text marks
    ' djs Always version 3. NO difference if maintainmode is used or not. 
    SampleText("Pursuit,3," + str$(Len(cmdLine$)));
    for i% := 1 to Len(cmdLine$) step 100 do
        SampleText(Mid$(cmdLine$, i%, 100));
    next
  

    StimHandle% := ProgRun(cmdLine$, 1);
    if StimHandle% <0 then 
        Message("Could not start stimulus."); 
        halt; 
    endif
    
	
	ToolbarSet(0,"",IdleProcessing%);	'Enable the IdleProcessing function
	ToolbarEnable(2,1);  'Enable Stop - we will use stop and not quit from here on out
	ToolbarEnable(1,0);  'Disable Start
	ToolbarEnable(6,0);  'Disable Select Wavemark
	ToolbarEnable(7,0);  'Disable Quit
	View(DataWindow%); 
	Yield(5);
return 1;
end;



''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Stop%()
    var i%, j%;
    var tempCount%;
    var calCalcOK% := 1;  'Assume calibration calculation is OK to do (will only calculate if appropriate)
    
	' Disable idle process func
	ToolbarSet(0,"");
    
    ' Tell stim app to shut down.
    SafeSampleKey("Q");
    Yield(0.1);
	SampleStop();
    
    ' Kill Fixstim
    ProgKill(StimHandle%);
    while ProgStatus(StimHandle%) > 0 do
        Yield();
    wend
    
    
    'If stop was called midway through a calibration run, determine whether there is enough data to just make the calculation
    'Right now the cutoff is *any* data for each point, but this could be changed to be a bit more restrictive
    if purDoCalibrationRun% = 1 and calibrationCompleted% = 0 then
        
        'Calculate weighted mean of eye position
        for i% := 0 to purCalibrationNUpDown%-1 do 'We get X position from up/down pursuits
            tempCount% := 0;
            if purXMeanIndices%[i%] = 0 then
                message("There is an X direction for which no data was collected, we cannot do calibration calculations!");
                calCalcOK% := 0;
                break
            endif;
            for j% := 0 to (purXMeanIndices%[i%])-1 do
                purEyeXPositionStatic[i%] += purXMean[i%][j%]*purXMeanNPoints%[i%][j%];  'Add in mean*count
                tempCount% += purXMeanNPoints%[i%][j%];  'Keep track of count
            next
            purEyeXPositionStatic[i%] := purEyeXPositionStatic[i%]/tempCount%;  'Divide total by count to get weighted mean
        next
        for i% := 0 to purCalibrationNLeftRight%-1 do 'We get Y position from left/right pursuits
            tempCount% := 0;
            if purXMeanIndices%[i%] = 0 then
                message("There is a Y direction for which no data was collected, we cannot do calibration calculations!");
                calCalcOK% := 0;
                break
            endif;
            for j% := 0 to (purYMeanIndices%[i%])-1 do
                purEyeYPositionStatic[i%] += purYMean[i%][j%]*purYMeanNPoints%[i%][j%];  'Add in mean*count
                tempCount% += purYMeanNPoints%[i%][j%];  'Keep track of count
            next
            purEyeYPositionStatic[i%] := purEyeYPositionStatic[i%]/tempCount%;  'Divide total by count to get weighted mean
        next
        
        if calCalcOK% = 1 then
            'Do linear regression, get offset and gain
            linearRegression%(purFixptXPositionStatic[],purEyeXPositionStatic[],VperDX,XVoltOffset,Xr2);  'Regressing eye position (in Volts) against actual fixpt position (in Degrees)
            linearRegression%(purFixptYPositionStatic[],purEyeYPositionStatic[],VperDY,YVoltOffset,Yr2);  'Return values are in Volts Per Degree (reciprocal of what we want) and Volts offset (what we want)
            DegreesPerVoltX := 1/VperDX;
            DegreesPerVoltY := 1/VperDY;
            
            'Check offset/gain for sanity
            'Do what here?  Dunno.  It would be nice to have an r^2 value, though I don't really know what a bad one is.
            'With the "good" data from Henry, the worst I've seen is 0.996!
            
            'Put values into registry
            SaveEyetrackerCalibrationValues();
            printlog("Eyetracker calibration values:\n");
            printlog("DegreesPerVoltX: %f\n",DegreesPerVoltX);
            printlog("DegreesPerVoltY: %f\n",DegreesPerVoltY);
            printlog("XVoltOffset: %f\n",XVoltOffset);
            printlog("YVoltOffset: %f\n",YVoltOffset);
            printlog("R-squared is %f in X and %f in Y\n",Xr2,Yr2);
            message("Eyetracker values saved to registry!");
        endif;
        
    endif;
    
    
    
    

	' Write parameter file
	WriteParameterFile();

	' Increment daily totals and save then
	TotalTrials% += nTrialsStarted%;
	SaveDailyTotals();
    
end;


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func PauseStimuli%();
    Pause% :=1;
    ToolbarEnable(4,0);  'Disable Pause
    ToolbarEnable(5,1);  'Enable Resume
    return 1;
end
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func ResumeStimuli%();
    Pause% :=0;
    ToolbarEnable(4,1);  'Enable Pause
    ToolbarEnable(5,0);  'Disable Resume
    return 1;
end

'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func SelectWavemarkDialog%()
	var iReturn%:=1;
	var i%;
    var whichWaveMark% := 1;
	DlgCreate("Select Wavemark");
	DlgInteger(1, "Input Wavemark to view, -1 for all", -1, 256);  'max is based on highest possible wavemark value
    
	i% := DlgShow(whichWaveMark%);

	if i% = 1 then
		PrintLog("SelectWavemarkDialog - user hit OK\n");
        for i% := 0 to purNWavemarks%-1 do  'for each wavemark channel
            View(DataWindow%).MarkMask(i%+1,0,0,-1);  'exclude all codes on layer 0
            View(DataWindow%).MarkMask(i%+1,0,1,whichWaveMark%);  'then include requested code (or all, if -1) on layer 0
        next;       
	endif;
	if i% = 0 then
		PrintLog("SelectWavemarkDialog - user hit Cancel\n");
	endif;
    'PrintLog("Return value is %d\n", iReturn%);  'always return 1, so don't bother reporting this
	return iReturn%;
end;






func IdleProcessing%()
	var iStatus% := 1;	
    var i%, j%, tempCount%;
    
	tNow := View(DataWindow%).MaxTime();

	xEye := (View(DataWindow%).ChanMeasure(XChannel%,2,tNow-.006,tNow-.001)-XVoltOffset)*DegreesPerVoltX;  'First subtract offset, then multiply by degPerVolt
	yEye := (View(DataWindow%).ChanMeasure(YChannel%,2,tNow-.006,tNow-.001)-YVoltOffset)*DegreesPerVoltY;

	' Don't update display every time....
	if tNow-tLastFixPtDisplayUpdate > .005 then
		View(XYWindow%).XYAddData(1,xEye,yEye);
		tLastFixPtDisplayUpdate := tNow;
        
        'Here we will want to redraw the pursuit window as well
        if purFixptMoving% = 1 then 'if the fixation point is currently moving on screen
            DrawPur(1);
        endif
        
        
	endif

	docase 
    case iState% = stateVSGWait% then
        ' Waiting for VSG to indicate it is ready. The indication is a pulse (up, then down, 1 frame apart) on port 6.
        if stateBegin% = 1 then
            LogStatus("VSGWait", "Begin waiting for Ready Pulse from VSG at " + str$(tNow));
            stateBegin% := 0;
        endif
        
        pulseFound% := View(DataWindow%).FindPulseUp%(ReadyChannel%, tLastTrigger+tic, tRise, tFall);
        
        if pulseFound% = 1 then
            LogStatus("VSGWait", "Got Ready Pulse from VSG at " + str$(tRise));
            Yield(1.0);
            tLastTrigger := tFall;
            ChangeStateTo(stateFixptUp%, tFall);
        else
            if pulseFound% = 0 then  'if a (short) "false" trigger is found, update tLastTrigger so we don't see it again
                LogStatus("VSGWait", "Got FALSE Ready Pulse from VSG at " + str$(tRise));
                tLastTrigger := tFall;
            endif;
        endif;
        
    case iState% = stateFixptUp% then
        ' If experiment is paused, this is where we should wait 
        if Pause% = 0 then
            'When we are ready  to put the fixpt up, determine trial values for this trial
            purCurrentDur := 0;
            purThisStartX := purStartX[purTrialOrder%[trialInd%]];
            purThisStartY := purStartY[purTrialOrder%[trialInd%]];
            purThisSpeed := purPursuitSpeed;  'always the same right now, but will need to be updated here if speed changes by trial
            purThisDir := purDirection[purTrialOrder%[trialInd%]];
            
            if purDoCalibrationRun% = 1 then
                if purThisDir = 0 or purThisDir = 180 then  'this is L-R
                    purDoXMeanThisTrial% := 0;  'if pursuit is L-R, we want to grab Y position
                    purXorYIndex% := FindFirstFloat%(purFixptYPositionStatic[],purThisStartY);
                else
                    purDoXMeanThisTrial% := 1;  'if pursuit is U-D, we want to grab X position
                    purXorYIndex% := FindFirstFloat%(purFixptXPositionStatic[],purThisStartX);
                endif
            endif
            
            LogStatus("RequestFixpt", "Request fixpt");
            SafeSampleKey("F");
            ChangeStateTo(stateWaitForFixptUp%, tNow);
        else 'if we are paused, reset tStateStart so that when pause comes off there is a full acquisition window
            tStateStart := tNow;
        endif
            
       
    case iState% = stateWaitForFixptUp% then
        if View(DataWindow%).FindRisingEdge%(FixationPointChannel%, tStateStart, tTrigger) = 0 then
            ' Fixation point is up
            LogStatus("WaitForFixPtOn", "Fixpt on at " + str$(tTrigger) + "\n");
            tLastTrigger := tTrigger;
            ChangeStateTo(stateWaitForAcquisition%, tTrigger);
            purFixptMoving% := 0;  'Reset, fixpt has not started moving
            DrawPur(1);	' this draws the initial location of the pursuit window on the Spike2 window
        endif

    case iState% = stateWaitForAcquisition% then
        ' Wait for animal to acquire the screen
        if stateBegin% = 1 then
            LogStatus("WaitForAcquisition", "Begin waiting for screen/fixpt acquisition at " + str$(tNow));
            stateBegin% := 0;
        endif
        
        docase
        case Looking2%(xEye,yEye) = 1 then  'here, successful acquisition overrides the acquisition timeout if they happen simultaneously
            SafeSampleKey("S");  'request stimulus to move
            LogStatus("WaitForAcquisition", "Request stimulus at " + str$(tNow));
            ChangeStateTo(stateWaitForStimMove%, tNow);
        case tNow - tStateStart > purAcquisitionTime then
            LogStatus("WaitForAcquisition", "Acquisition window timed out at " + str$(tNow));
            'request fixpt down
            SafeSampleKey("X");
            purSkipTimeOut% := 0;  'indicate to go to acquisition TO
            ChangeStateTo(stateWaitForBlank%,tNow);
        endcase
        
        
        
    case iState% = stateWaitForBlank% then
    
        if stateBegin% = 1 then
            LogStatus("WaitForBlank", "Begin waiting for blank at " + str$(tStateStart));
            stateBegin% := 0;
        endif
    
        if View(DataWindow%).FindFallingEdge%(FixationPointChannel%, tStateStart, tTrigger) = 1 then  'fixpt channel will register blank whether a stimulus is up or not
            ' Fixation point is off
            tLastTrigger := tTrigger;
            DrawPur(0);	'remove pursuit window
            docase
            case purSkipTimeOut% = 0 then
                ChangeStateTo(stateAcquisitionTO%, tTrigger);
                LogStatus("WaitForBlank", "Fixpt Channel blanked at " + str$(tTrigger));
            case purSkipTimeOut% = 1 then    'if we want to skip the timeout
                ChangeStateTo(stateInterTrialInterval%, tTrigger); 
                LogStatus("WaitForBlank", "Fixpt Channel blanked at " + str$(tTrigger));            
            endcase
            
        endif    
        
        
    case iState% = stateAcquisitionTO% then
        'If the animal fails to acquire, then administer timeout
        if stateBegin% = 1 then
            LogStatus("AcquisitionTO", "Begin acquisition timeout at " + str$(tNow));
            stateBegin% := 0;
        endif
        
        if tNow - tStateStart > purAcquisitionTO then
            LogStatus("AcquisitionTO", "End acquisition timeout at " + str$(tNow));
            ChangeStateTo(stateInterTrialInterval%,tNow);
        endif
        
         
    case iState% = stateWaitForStimMove% then
        'Wait for the fixation point to start moving
        if stateBegin% = 1 then
            LogStatus("WaitForStimMove", "Waiting for fixation point to start moving on at " + str$(tNow));
            stateBegin% := 0;
        endif
        
        'Check for fixation break, if broken move out
        if Looking2%(xEye,yEye) = 0 then
            'request fixpt down
            SafeSampleKey("X");
            purSkipTimeOut% := 0;  'indicate to go to acquisition TO
            ChangeStateTo(stateWaitForBlank%,tNow);
        else 
            if View(DataWindow%).FindRisingEdge%(StimChannel%, tStateStart, tTrigger) = 0 then
                ' Stimulus is up
                LogStatus("WaitForStimMove", "Stimulus started moving at " + str$(tTrigger));
                tLastTrigger := tTrigger;
                sampletext(Str$(trialInd%+1) + "," + Str$(purThisStartX) + "," + Str$(purThisStartY) + "," + Str$(purThisSpeed) + "," + Str$(purThisDir), tTrigger);
                if purGracePeriod > 0 then  'if there is a grace period, wait out grace period without checking eye position
                    ChangeStateTo(statePursuitGrace%, tTrigger);
                else
                    ChangeStateTo(stateHoldPursuit%, tTrigger);  'if there is no grace period, go straight to fixation hold
                endif
                purFixptMoving% := 1;
                tPursuitStart := tStateStart;  'tStateStart was reset by ChangeStateTo above, need to hold pursuit start time across states
                nIntermediateRewards% := CalcIntermediateRewardTimes%(purIntermediateRewardTime[],purMinInterveningRewards%,purMaxInterveningRewards%,purMeanInterveningRewardInterval,purGracePeriod,purPursuitDur[purTrialOrder%[trialInd%]]);
                intermediateRewardsGiven% := 0;  'reset intermediate reward count
            endif
        endif        
        
        
        
    case iState% = statePursuitGrace% then
        if stateBegin% = 1 then
            LogStatus("PursuitGrace", "Pursuit grace period has begun at " + str$(tNow));
            stateBegin% := 0;
        endif
        purCurrentDur := tNow - tPursuitStart;
        if purCurrentDur >= purGracePeriod then
            ChangeStateTo(stateHoldPursuit%, tNow);
        endif;
        
       
    case iState% = stateHoldPursuit% then
        if stateBegin% = 1 then
            LogStatus("HoldPursuit", "Pursuit enforcement has begun at " + str$(tNow));
            stateBegin% := 0;
        endif
        purCurrentDur := tNow - tPursuitStart;
        docase
        case purCurrentDur >= purIntermediateRewardTime[intermediateRewardsGiven%] and nIntermediateRewards% > intermediateRewardsGiven% then  'give intermediate reward    GetJuiceRewardMS%(), 
            intermediateRewardsGiven% += 1;  'increment intermediate reward count
            ChangeStateTo(stateIntermediateReward%,tNow);
        case purCurrentDur >= purPursuitDur[purTrialOrder%[trialInd%]] then  'pursuit is over
            purFixptMoving% := 2;  'Indicate fixpt is no longer moving - this could be 0 as there is no need to indicate that fixpt is in "end" position, but it's OK
            'request fixpt down
            SafeSampleKey("X");
            ChangeStateTo(stateWaitForFixptOff%,tNow);
            LogStatus("HoldPursuit", "Pursuit complete at " + str$(tNow));
        case Pursuing%(xEye,yEye) = 0 then  'loss of pursuit
            purFixptMoving% := 0;  'Indicate fixpt is no longer moving, different value than successful trial, does it matter?
            'request fixpt down
            SafeSampleKey("X");
            purSkipTimeOut% := 0;  'indicate to go to acquisition TO ???  May change this to skip the TO, ask Hank.
            ChangeStateTo(stateWaitForBlank%,tNow);
            LogStatus("HoldPursuit", "Pursuit failed at " + str$(tNow));
            'don't advance without success
        endcase
        
              
        
    case iState% = stateWaitForFixptOff% then  'differs from WaitForBlank in that we can move to reward/next trial
        'Wait for the fixpt to turn off
        if stateBegin% = 1 then
            LogStatus("WaitForFixptOff", "Waiting for fixpt off at " + str$(tNow));
            stateBegin% := 0;
        endif
        
        if View(DataWindow%).FindFallingEdge%(FixationPointChannel%, tLastTrigger, tTrigger) = 1 then 
            tLastTrigger := tTrigger;
            DrawPur(0);  'And remove the pursuit window
            LogStatus("WaitForFixptOff", "Fixpt off at " + str$(tLastTrigger));
            ChangeStateTo(stateReward%, tLastTrigger);
        endif
        
        
        
    case iState% = stateIntermediateReward% then
        LogStatus("IntermediateReward", "Delivering intermediate reward at " + str$(tNow));
        purRewardDurSec := DefaultReward();  'Give reward, return how long the reward was, 0 is legal if no reward
        if purRewardDurSec > 0 then  'increment TotalRewards if reward is given
            TotalRewards% += 1;
        endif
        ChangeStateTo(stateHoldPursuit%,tNow);  'just go back to HoldPursuit, don't worry about any reward duration delay, that will all be dealt with when calculating the times of the reward
        
        
       
     case iState% = stateReward% then
        LogStatus("Reward", "Delivering reward at " + str$(tNow));
        purRewardDurSec := DefaultReward();  'Give reward, return how long the reward was, 0 is legal if no reward
        tNow := View(DataWindow%).MaxTime();  'update tNow so the reward wait is as precise as possible
        if purRewardDurSec > 0 then  'increment TotalRewards if reward is given
            TotalRewards% += 1;
            purRewardDurSec += 0.020;  'add 20 ms for "safety", only do this if reward given
        endif
        
        'DURING trial's final reward do calculations for calibration (since stateWaitReward repeats until the reward is over, do not do it there)
        if purDoCalibrationRun% = 1 then
            if purDoXMeanThisTrial% = 1 then  'do X
                nValsDataReturned% := ChanData(XChannel%,XData[],tPursuitStart,tPursuitStart+purPursuitDur[purTrialOrder%[trialInd%]]);  'grab eye X position values
                GetStationaryAxisMean%(XData[],purGracePeriodPoints%,purCalNStDev%,purMean,purStDev,purNVal%);  'Calculate no-outlier mean, stdev, NValsKept
                'Decide if data should be kept - not sure what to do here (if anything??)
                
                
                'If keeping data, enter mean and NVals into correct variables, increment index
                purXMean[purXorYIndex%][purXMeanIndices%[purXorYIndex%]] := purMean;  'put in mean
                purXMeanNPoints%[purXorYIndex%][purXMeanIndices%[purXorYIndex%]] := purNVal%;  'put in NVal%
                purXMeanIndices%[purXorYIndex%] += 1;  'increment index, as we've filled this one
                purCalibrationAdvance% := 1;
            else 'do Y
                nValsDataReturned% := ChanData(YChannel%,YData[],tPursuitStart,tPursuitStart+purPursuitDur[purTrialOrder%[trialInd%]]);  'grab eye Y position values
                GetStationaryAxisMean%(YData[],purGracePeriodPoints%,purCalNStDev%,purMean,purStDev,purNVal%);  'Calculate no-outlier mean, stdev, NValsKept
                'Decide if data should be kept - not sure what to do here (if anything??)
                
                
                'If keeping data, enter mean and NVals into correct variables, increment index
                purYMean[purXorYIndex%][purYMeanIndices%[purXorYIndex%]] := purMean;  'put in mean
                purYMeanNPoints%[purXorYIndex%][purYMeanIndices%[purXorYIndex%]] := purNVal%;  'put in NVal%
                purYMeanIndices%[purXorYIndex%] += 1;  'increment index, as we've filled this one
                purCalibrationAdvance% := 1;
            endif
        endif
        ChangeStateTo(stateWaitReward%,tNow);       
        
        
        
    case iState% = stateWaitReward% then
        if tNow > tStateStart + purRewardDurSec then
            ChangeStateTo(stateTrialCompleted%,tNow);
        endif;
        
          
    case iState% = stateTrialCompleted% then
        nTrialsCompleted% += 1; 
        printlog("Number of stimuli completed is %d\n",nTrialsCompleted%);
        ToolbarText(str$(nTrialsCompleted%) + "/" + str$(purNValues%) + " stimuli completed.");
        docase
        case purDoCalibrationRun% = 1 and purCalibrationAdvance% = 0 then  'if we are doing calibration, and we reject this pursuit, repeat it
            LogStatus("TrialCompleted", "Poor calibration pursuit, NOT advancing stimulus, repeating");
            ChangeStateTo(stateInterTrialInterval%, tStateStart); 
        case nTrialsCompleted% = purNValues% then
            'If it's a calibration run, make final calculations and put values into the registry
            if purDoCalibrationRun% = 1 then
                'Calculate weighted mean of eye position
                for i% := 0 to purCalibrationNUpDown%-1 do 'We get X position from up/down pursuits
                    tempCount% := 0;
                    for j% := 0 to (purCalibrationNRepeats%*2)-1 do
                        purEyeXPositionStatic[i%] += purXMean[i%][j%]*purXMeanNPoints%[i%][j%];  'Add in mean*count
                        tempCount% += purXMeanNPoints%[i%][j%];  'Keep track of count
                    next
                    purEyeXPositionStatic[i%] := purEyeXPositionStatic[i%]/tempCount%;  'Divide total by count to get weighted mean
                next
                for i% := 0 to purCalibrationNLeftRight%-1 do 'We get Y position from left/right pursuits
                    tempCount% := 0;
                    for j% := 0 to (purCalibrationNRepeats%*2)-1 do
                        purEyeYPositionStatic[i%] += purYMean[i%][j%]*purYMeanNPoints%[i%][j%];  'Add in mean*count
                        tempCount% += purYMeanNPoints%[i%][j%];  'Keep track of count
                    next
                    purEyeYPositionStatic[i%] := purEyeYPositionStatic[i%]/tempCount%;  'Divide total by count to get weighted mean
                next
                
                'Do linear regression, get offset and gain
                linearRegression%(purFixptXPositionStatic[],purEyeXPositionStatic[],VperDX,XVoltOffset,Xr2);  'Regressing eye position (in Volts) against actual fixpt position (in Degrees)
                linearRegression%(purFixptYPositionStatic[],purEyeYPositionStatic[],VperDY,YVoltOffset,Yr2);  'Return values are in Volts Per Degree (reciprocal of what we want) and Volts offset (what we want)
                DegreesPerVoltX := 1/VperDX;
                DegreesPerVoltY := 1/VperDY;
                
                'Check offset/gain for sanity
                'Do what here?  Dunno.  It would be nice to have an r^2 value, though I don't really know what a bad one is.
                'With the "good" data from Henry, the worst I've seen is 0.996!
                
                'Put values into registry
                SaveEyetrackerCalibrationValues();
                printlog("Eyetracker calibration values:\n");
                printlog("DegreesPerVoltX: %f\n",DegreesPerVoltX);
                printlog("DegreesPerVoltY: %f\n",DegreesPerVoltY);
                printlog("XVoltOffset: %f\n",XVoltOffset);
                printlog("YVoltOffset: %f\n",YVoltOffset);
                printlog("R-squared is %f in X and %f in Y\n",Xr2,Yr2);
                message("Eyetracker values saved to registry!");
                
                calibrationCompleted% := 1;  'don't re-do calibration in Stop%()
            endif
       
            ' We're all done
            LogStatus("TrialCompleted", "All stimuli complete!");
            Stop%();
            iStatus% := 0;  
        else
            'Advance Stimulus
            SafeSampleKey("a");
            trialInd% += 1;
            LogStatus("TrialCompleted", "Advancing stimulus");
            ChangeStateTo(stateInterTrialInterval%, tStateStart); 
        endcase
             
       
    case iState% = stateInterTrialInterval% then 
        if stateBegin% = 1 then
            LogStatus("InterTrialInterval", "InterTrialInterval began at " + str$(tNow));
            stateBegin% := 0;
        endif   
        
        if tNow > tStateStart + purITI then
            LogStatus("InterTrialInterval", "InterTrialInterval ended at " + str$(tNow));
            ChangeStateTo(stateFixptUp%,tNow);
        endif
    

    else
        
        ' Unknown state!
        Message("Unknown state=" + str$(iState%));
        SafeSampleKey("o");  'turn opto off, just in case
        halt;

	endcase;

	'tLast := tNow;  'unused
	return iStatus%;
end;



''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'Used for the initial acquisition of the fixation point
'This is an updated version of Looking%() that uses the correct start points on each trial,
'not really intended to be ported to other scripts
func Looking2%(EyePosX,EyePosY)
	'Determine if the eye position is within the fixation window
    if purAlwaysLooking% = 2 then 'purAlwaysLooking% = 1 means "enforce acquisition only", so only purAlwaysLooking% = 2 applies here
        return 1; 
    endif;
    
    if (Pow(EyePosX-purThisStartX,2) + Pow(EyePosY-purThisStartY,2)) <= Pow(purPursuitWindowRadius,2) then 
        return 1; 
    else 
        return 0; 
    endif

end;


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'Used for the pursuit of the fixation point
func Pursuing%(EyePosX,EyePosY)
    var PursuitX;
    var PursuitY;
	'Determine if the eye position is within the fixation window
    if purAlwaysLooking% >= 1 then 'purAlwaysLooking% = 1 means "enforce acquisition only", purAlwaysLooking% = 2 means "enforce nothing", both apply here
        return 1; 
    endif;
    
    'calculate real time PursuitX and PursuitY position of the pursuit point
    PursuitPointLoc(PursuitX,PursuitY,purThisStartX,purThisStartY,purThisSpeed,purThisDir,purCurrentDur)
    
    if (Pow(EyePosX-PursuitX,2) + Pow(EyePosY-PursuitY,2)) <= Pow(purPursuitWindowRadius,2) then 
        return 1; 
    else 
        return 0; 
    endif

end;




'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'Used to calculate the position of the fixation point when pursuing (calling it "pursuit
'point" here for clarity)
'PPX and PPY will be filled with the X/Y position, in degrees, of the pursuit point
'StartX and StartY are in degrees
'PPSpeed is in deg/sec
'PPDir is the direction in degrees using standard trig coordinates (0 = right, 90 = up)
'PPTotalTime is the amount of time the pursuit point has been moving, in seconds
func PursuitPointLoc(&PPX,&PPY,StartX,StartY,PPSpeed,PPDir,PPTotalTime)
'    var deltaX;
'    var deltaY;
'    var speedX;
'    var speedY;
    var pi := 3.1415926;
    
    PPDir := PPDir*pi/180;
    'retained to demonstrate calculation, but using one line is easier
'    speedX := Cos(PPDir)*PPSpeed;
'    speedY := Sin(PPDir)*PPSpeed;
'    deltaX := speedX*PPTotalTime;
'    deltaY := speedY*PPTotalTime;
'    PPX := StartX+deltaX;
'    PPY := StartY+deltaY;
    
    PPX := StartX+(Cos(PPDir)*PPSpeed*PPTotalTime);
    PPY := StartY+(Sin(PPDir)*PPSpeed*PPTotalTime);
end;




'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc WriteParameterFile()
	var parFileName$;
	var parFileBase$;
	var parHandle%;
    var ii%;


	' get filename for parfile (data file + "par" extension) and open it
	View(DataWindow%);
	parFileBase$ := FileName$(1) + FileName$(2) + FileName$(3) + FileName$(4);
	parFileName$ := parFileBase$ + ".par";
	PrintLog("par filename is " + parFileName$ + "\n");
	parHandle% := FileOpen(parFileName$, 8, 1);

	' write general info - eye coil gains, dist to screen
	Print("Parameters for %s\n\n", parFileBase$);

	Print("General information\n");
	Print("-------------------\n\n");
	Print("Distance to screen (MM)    : %s\n", GetDistanceToScreenMM$());
	Print("Eye coil software gain (X) : %f\n", DegreesPerVoltX);
	Print("Eye coil software gain (Y) : %f\n", DegreesPerVoltY);
	Print("Eye coil sampling freq (Hz): %d\n", EyeCoilSamplingFrequency%);
    Print("Wavemark ports             : %s\n", GetWavemarkPorts$());
    Print("Continuous ports           : %s\n", GetContinuousPorts$());
	Print("Reward size (ms)           : %d\n", GetJuiceRewardMS%());
	Print("Background color           : %s\n", purBackgroundColor$);
    
	Print("\nExperimental parameters\n");
	Print("-------------------------\n\n");

    Print("Always Looking?                          : %d\n", purAlwaysLooking%);
	Print("Random Progression?                      : %d\n", purRandomProgression%);
    Print("Number of left-right steps               : %d\n", purNLeftRight%);
    Print("Number of up-down steps                  : %d\n", purNUpDown%);
	Print("Number of repeats                        : %d\n", purNRepeats%);
    Print("Percent of trials rewarded               : %f\n", pReward*100);
    Print("Pursuit Speed (deg/s)                    : %f\n", purPursuitSpeed);
    Print("Pursuit window radius (deg)              : %f\n", purPursuitWindowRadius);
    Print("Pursuit grace period (s)                 : %f\n", purGracePeriod);
	Print("Inter-trial interval                     : %f\n", purITI);
    Print("Acquisition time (s)                     : %f\n", purAcquisitionTime);
    Print("Acquisition time out (s)                 : %f\n", purAcquisitionTO);
    Print("Screen width (mm)                        : %f\n", purScreenMMX);
    Print("Screen Height (mm)                       : %f\n", purScreenMMY);
    Print("Percent of screen used                   : %f\n", purPctScreenUsed);
    
    if purDoCalibrationRun% = 1 then
        Print("Calibration Results\n");
        Print("-------------------\n\n");
        Print("Eye coil software gain, deg/V (X) : %f\n", DegreesPerVoltX);
        Print("Eye coil software gain, deg/V (Y) : %f\n", DegreesPerVoltY);
        Print("Eye coil offset, V (X)            : %f\n", XVoltOffset);
        Print("Eye coil offset, V (Y)            : %f\n", YVoltOffset);
    endif;
    
        
	' close parfile
	FileClose(0);

end;


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Juice%()  'note that this function is only used for Toolbar-based juice delivery
    if JuicerType% = 1 then  'open-high juicer, dispense based on ms
        DeliverReward();
    else
        if JuicerType% = 2 then  'open-low juicer, dispense based on number of hits
            DeliverRewardNumber();
        endif;
    endif;
    return 1;
end;



' Used to hard-quit from toolbar. This will close data files without saving!!! 
' It is important that this function be disabled once sampling is started!!!

func Quit%()
    
	FileClose(-1,-1);
	return 0;
end;



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc ChangeStateTo(stateTo%, tStart)
	iState% := stateTo%;
    stateBegin% := 1;  'Reset for next state - this line allows us to do a bit more specific logging
	if tStart > 0 then 
        tStateStart := tStart; 
    endif;
end;




'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' DrawFix
' 
' Draws Fixation window in xy window (iDraw%==1) or blanks it (0). 
' Function is currently unused, replaced by DrawPur()
'proc DrawFix(iDraw%)
'
'	if iDraw% > 0 then
'		' Draw fixation window in xy window
'        view(XYWindow%).XYAddData(iStimChannel%, FixWindowX[], FixWindowY[]);
'	else 
'		' erase the window from xy view
'		View(XYWindow%).XYDelete(iStimChannel%);
'	endif
'
'end;


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' DrawPur
' 
' Blanks then draws Pursuit window in xy window (iDraw%==1) or simply blanks it (0). 
proc DrawPur(iDraw%)

	if iDraw% > 0 then        
        ' erase the previous window from xy view
		View(XYWindow%).XYDelete(iStimChannel%);
        
        'Calcuate the pursuit window
        var index%;
        var twopi;
        twopi := 2.0*4.0*ATan(1.0);
        var PursuitX;
        var PursuitY;
        
        'calculate real time PursuitX and PursuitY position of the pursuit point
        PursuitPointLoc(PursuitX,PursuitY,purThisStartX,purThisStartY,purThisSpeed,purThisDir,purCurrentDur)
        
        for index% := 0 to 35 do
            FixWindowX[index%] := PursuitX + purPursuitWindowRadius * Cos(index% * twopi/36.0);
            FixWindowY[index%] := PursuitY + purPursuitWindowRadius * Sin(index% * twopi/36.0);
        next;
        
		' Draw pursuit window in xy window
        view(XYWindow%).XYAddData(iStimChannel%, FixWindowX[], FixWindowY[]);
	else 
		' erase the window from xy view
		View(XYWindow%).XYDelete(iStimChannel%);
	endif

end;



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Put two vectors of numbers into a comma separated string
Func StringifyProgression2$(n%, vec1[], vec2[], ind%[])
	var s$;
	var i%;
    
    if n% > purMaxTrials% then
        message("You have requested " + Str$(n%) + " trials, max is " + Str$(purMaxTrials%) + "!  Quitting!");
        halt
    endif;
    
    
	for i% := 0 to n%-1 do
		if i% > 0 then 
			s$ += ",";
		endif
		s$ += str$(vec1[ind%[i%]]);
        s$ += ",";
        s$ += str$(vec2[ind%[i%]]);
	next
	return s$;
end;


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Put three vectors of numbers into a comma separated string
func StringifyProgression3$(n%, vec1[], vec2[], vec3[], ind%[])
	var s$;
	var i%;
    
    if n% > purMaxTrials% then
        message("You have requested " + Str$(n%) + " trials, max is " + Str$(purMaxTrials%) + "!  Quitting!");
        halt
    endif;
    
    
	for i% := 0 to n%-1 do
		if i% > 0 then 
			s$ += ",";
		endif
		s$ += str$(vec1[ind%[i%]]);
        s$ += ",";
        s$ += str$(vec2[ind%[i%]]);
        s$ += ",";
        s$ += str$(vec3[ind%[i%]]);
	next
	return s$;
end;


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Return times of intermediate rewards
func CalcIntermediateRewardTimes%(&times[],mymin%,mymax%,mymean,mystart,myend)
    var count% := 0;
    var isOK% := 0;
    var nRew% := 0;
    var i% := 0;
    
    'if there are not any rewards, just return
    if mymax% = 0 then
        return nRew%;
    endif
    
    'otherwise calculate reward times
    ArrConst(times[],0);  'clear times[]
    while isOK% = 0 and count% < 1000 do  'do this up to 1000 times to get it right
        count% += 1;  'Increment count so we don't get stuck in WHILE if we don't get it right
        randexp(times[],mymean);  'calculate exponential random intervals (e.g. follows a Poisson distribution)
        ArrIntgl(times[]);  'get cumulative sum of intervals = times
        ArrAdd(times[],mystart);  'add in grace-period offset to each calculated time
        
        'Count rewards falling during pursuit window (excluding grace period), cut off 100 ms before end
        nRew% := 0;
        for i% := 0 to len(times[])-1 do  'go through all calculated times
            if times[i%] <= myend-0.1 then  'if this reward is before the end of the pursuit (-100 ms)
                nRew% += 1;  'Count this reward!
            endif;
        next
        
        'Make sure the number of rewards is acceptable (by minumum), otherwise, try again with new random roll!
        if nRew% >= mymin% then  
            isOK% := 1;  'break out of WHILE if we got an acceptable number
        endif
        
    wend
    
    'If the total number of rewards is OVER the max, just include the first MAX rewards rather than recalculate
    if nRew% > mymax% then
        nRew% := mymax%;
    endif
    
    'If we went 1000 times and didn't get an acceptable set of rewards, give up - really this shouldn't happen without bizarre values
    if isOK% = 0 then
        nRew% := 0;
    endif
    
    return nRew%;
end


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Calculation to get mean value while hopefully ignoring outliers
func GetStationaryAxisMean%(v1[],nSkip%,nStdev,&m,&stdev,&nVal%)
    
    'This function is designed to mimic one step in the Pursuit testing in Matlab.  The idea here is to get
    'a mean value for the stationary axis of the eye while ignoring outliers (typically small saccades) that
    'can drag the mean in one direction.  Since the eye position in the stationary axis is relatively stable
    'we can use a relatively low number of more reliable measurements to get an accurate reading.  At least,
    'in principle.  The whole array of stationary-axis voltage values should be in V1[].  NSKIP% is the
    'number of points to skip at the beginning of the pursuit, should be based on the catch-up saccade grace
    'period.  NSTDEV adjusts the positioning of the included-data cutoff.  NSTDEV = 1 has been a good value 
    'in the Matlab testing, lower values will be more restrictive, higher values more permissive.  Updates 
    'arguments for the mean (M) and standard deviation (STDEV) of the restricted data, as well as the number
    'of values retained inside the included-data cutoff (NVAL%).
    
    var v1Len%;
    v1Len% := Len(v1[]);
    
    var keep[v1Len%-nSkip%];  'Spike2 now allows variables to be used in array size declarations, thankfully
    var i%;
    'var s1;  'Timing variables, commented out but we may test on real data
    'var s2;  
    
    nVal% := 0;
    
    ArrSum(v1[nSkip%:(v1Len%-nSkip%)],m,stdev);  'Get mean, stdev of V1[], skipping requested values
    
    'Print logging commented out, may use for test on real data
    'printlog("V1 mean: %f, V1 std: %f\n",m,stdev);
    
    'Loop through each non-skipped value in V1[], retain value if it lies between mean +/- stdev*factor
    's1 := Seconds();
    for i% := nSkip% to v1Len%-1 do
        if v1[i%] > m-(stdev*nStdev) and v1[i%] < m+(stdev*nStdev) then
            keep[nVal%] := v1[i%];
            nVal% += 1;
        endif;
    next
    's2 := Seconds();
    
    ArrSum(keep[0:nVal%],m,stdev);  'Get mean, stdev of retained values
    
    'Print logging commented out, may use for test on real data
    'printlog("New mean: %f, std: %f, time required is %f\n",m,stdev,s2-s1);
    'printlog("Max value in KEEP is %f, min value is %f\n",keep[max(keep)],keep[min(keep)]);
    
    return 1;    
    
end



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Calculate linear regression coefficients!
func linearRegression%(x[],y[],&slope,&intercept,&r2)
    'A function to calculate a simple linear regression
    'Enter a vector of X values and a vector of Y values,
    'Returns SLOPE and INTERCEPT and R2
    
    'Much shorter version does not calculate r-squared
'    var xM;
'    var yM;
'    var xSS;
'    var xySS;
'    
'    ArrSum(x[],xM);                'Get x mean in xM
'    ArrSum(y[],yM);                'Get y mean in yM
'    ArrSub(x[],xM);                'Subtract mean from x[]
'    ArrSub(y[],yM);                'Subtract mean from y[]
'    ArrMul(y[],x[]);               'Get product of x difference and y difference, place in y[]
'    ArrMul(x[],x[]);               'Get square of x difference, place in x[]
'    xSS := ArrSum(x[]);            'Get variance * N-1
'    xySS := ArrSum(y[]);           'Get covariance * N-1
'    slope := xySS/xSS;             'Regression slope is covariance/variance
'    intercept := yM - (slope*xM);  'Intercept is offset required to make y equal to x*slope
'    
'    
'    return 1;
    
    
    'Much longer version calculates r-squared
    var xM;
    var yM;
    var xSS;
    var xySS;
    var xyS;
    var n;
    var n%;
    n := Len(x[]);                 'Get number of elements
    n% := n;
    var xsq[n%];
    var ysq[n%];
    var xy[n%];
    var xs;
    var ys;
    var a;
    var b, br;
    var c, cr;
    
    xs := ArrSum(x[],xM);          'Get x mean in xM, return x sum
    ys := ArrSum(y[],yM);          'Get y mean in yM, return y sum
    ArrConst(xsq[],x[]);           'Get copy of x
    ArrConst(ysq[],y[]);           'Get copy of y
    ArrMul(xsq[],xsq[]);           'Get point-wise square of x
    ArrMul(ysq[],ysq[]);           'Get point-wise square of y
    ArrConst(xy[],x[]);            'Get another copy of x
    ArrMul(xy[],y[]);              'Get point-wise x[]*y[];
    xyS := ArrSum(xy[]);           'Get sum of xy
    ArrSub(x[],xM);                'Subtract mean from X
    ArrSub(y[],yM);                'Subtract mean from Y
    ArrMul(y[],x[]);               'Get product of x difference and y difference, place in y[]
    ArrMul(x[],x[]);               'Get square of x difference, place in x[]
    xSS := ArrSum(x[]);            'Get variance * N-1
    xySS := ArrSum(y[]);           'Get covariance * N-1
    
    a := (n*xyS)-(xs*ys);          'Get a (whatever it is...)
    b := (n*ArrSum(xsq[]))-(xs*xs);'Get b (whatever it is...)
    br := SqRt(b);                 'Get square root of b
    c := (n*ArrSum(ysq[]))-(ys*ys);'Get c (whatever it is...)
    cr := SqRt(c);                 'Get square root of c
    
    slope := xySS/xSS;             'Regression slope is covariance/variance
    intercept := yM - (slope*xM);  'Intercept is offset required to make y equal to x*slope
    r2 := a/(br*cr);               'Get r
    r2 := r2*r2;                   'Get r-squared
    
    return 1;
    
end


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
' Because there's no FIND function in Spike2 - this does appear to work with floats (I do worry about float-float equality)
func FindFirstFloat%(arr[],value);
    'The simple idea here is to return the index of the first value in ARR[] that is equal to VALUE.
    'Because sometimes you need to do this.
    'Jeez.
    
    var i%;
    var ret% := -1;
    for i% := 0 to Len(arr[])-1 do
        if arr[i%] = value then
            ret% := i%;
            break
        endif
    next
    
    if ret% = -1 then
        message("Warning, value not found in FindFirstFloat, expect imminent indexing crash!");
    endif
    
    return ret%;
end
