' $Id$
' Update 11/8/11 Jeff, includes multi-juicer updates
const rivCVSID$ := "$Id$";

#include "../util/TrialBlockGen.s2s"
#include "../util/ChannelUtilities.s2s"
#include "../util/UsreyUtil.s2s"
#include "../util/TrialGenInterface.s2s"
#include "UsreyGratings.s2s"
#include "Joystick.s2s"
#include "UsreyFixationPoint.s2s"
#include "UsreyDAQ.s2s"

' Special for testing. Set to 1 to choose trial type each trial.
var rivChooseTrialTypes% := 0;

' Local config variables

var rivMaxWaitForReadyTime := 1.0;
var rivReadyHoldTime    := 1.0;
var rivReadyHoldRewardSizeMS% := 1;
var rivReadyFailWaitTime := 1.0;
var rivMaxResponseTime := 1.0;
var rivResponseFailWaitTime := 3.0;
var rivResponseIncorrectWaitTime := 3.0;
var rivResponseBrokenWaitTime := 3.0;
var rivMaxStimWaitTime := 1.5;
var rivMaxStimTime := 3.0;
var rivMinGoodTrialTime := 2.0;
var rivResponseCorrectRewardSizeMS% := 3;
var rivMaintainResponseRewardSizeMS% := 1;
var rivSwapRewardSizeMS% := 2;
var rivSwapMinTime := 2;
var rivSwapMaxTime := 4;
var rivSwapMaxResponseTime := 2.0;
var rivMaintainResponseRewardWait := .5;
var rivUseFixation% := 0;
var rivMaxAcquisitionTime := 4;
var rivAcquisitionFailWaitTime := 1;
var rivFixationHoldTime := 0.5;
var rivFixationFailWaitTime := 1;
var rivAlwaysLooking% := 0;
var rivUseBeep% := 1;
var rivCorrectionTrials% := 0;
var rivBeepLengthMS% := 100;
var rivSingleRewardMS% := 50;
var rivUseSingleReward% := 0;
var rivSingleRewardProb% := 100;
var rivTempUseSingleReward% := 0;   ' the value of rivUseSingleReward is not available in Reward/Swap/Catch dialog
var rivNBlocks% := 10;
'var rivNTrialsEachTypePerBlock% := 4;     ' Number of trials/block = this * 2
var rivNTrainingPerBlock% := 2;     ' Number of training trials per block (should be even for balancing L/R)
var rivNRivalryperBlock% := 2;      ' Number of rivalry trials per block (should be even for balancing L/R)
var rivNRivalryCatchPerBlock% := 2; ' Number of rivalry/catch trials per block (should be even for balancing L/R)
var rivNTrainingRTPerBlock% := 2;   ' Number of training->rivalry->training trials per block (should be even for balancing L/R)
var rivNTrainingFixedPerBlock% := 2;' Number of training->fixed trials per block (should be even for balancing L/R)
var rivLeftGrating$ := "-3,0,3,3,100,.5,.5,0,b,s,e";
var rivRightGRating$ := "3,0,3,3,100,.5,.5,90,b,s,e";
var rivLeftGratingX, rivLeftGratingY, rivLeftGratingD;
var rivRightGratingX, rivRightGratingY, rivRightGratingD;
var rivFixationX, rivFixationY, rivFixationD, rivFixationWindowD;
var rivLeftGratingTextItem%;
var rivRightGratingTextItem%;
var rivFixationTextItem%;
var rivElectrodeTextItem%;
var rivFixationArg$;
var rivElectrodes%[8];
var rivTRTTime1Min := 4;
var rivTRTTime1Max := 7;
var rivTRTTime2Min := 4;
var rivTRTTime2Max := 7;
var rivTRTTime1;    ' Time1 is the time for training (L/R) stimulus before rivalry.
var rivTRTTime2;    ' Time2 is the time for the rivalry stimulus in TRT trials. 
var rivTRTTime3;
var rivTFixedMinTime := 8;
var rivTFixedMaxTime := 12;
var rivTFixedTime;  ' Time for training stimulus before it being fixed


' new vars for rivalry
var rivRivalryRewardHoldoff := .4;  ' during rivalry, min time between rewards
var rivLastRivalryResponse%;        ' In rivalry maintain state, this is the last response. 
var rivRivalryCatchMinSwitchTime := 3;
var rivRivalryCatchMaxSwitchTime := 8;
var rivRivalryCatchSwitchTime;      ' In catch trials make the switch after this time

' xhair parameters
var rivUseXhairs% := 0;
var rivXhairInnerRadiusOffset := 3;
var rivXhairMiddleRadiusOffset := 4;
var rivXhairOuterRadiusOffset := 5;
var rivXhairNumGridDivisions% := 32;
var rivXhairInnerOffset := 1;
var rivXhairOuterOffset := 2;

' Counters

var rivCtrNTrials% := 0;
var rivCtrReadyFail% := 0;
var rivCtrNoResponse% := 0;
var rivCtrIncorrect% := 0;
var rivCtrCorrect% := 0;
var rivCtrNRewards% := 0;

' Channel numbers for DAQ inputs

var rivChanEyeX%    := 11;
var rivChanEyeY%    := 12;
var rivChanJoy%     := 13;

' VSG trigger input channels

var rivChanMasterVSGReady%  :=  20;
var rivChanSlaveVSGReady%   :=  21;
var rivChanMasterPage%      :=  22;
var rivChanSlavePage%       :=  23;
var rivChanMasterGrating%   :=  24;
var rivChanSlaveGrating%    :=  25;

' windows

var rivWindowData%;
var rivWindowXY%;

' display channels

var rivChanMonitor%;
var rivChanJoystickPos%;
var rivChanJoystickRangeL%;
var rivChanJoystickRangeC%;
var rivChanJoystickRangeR%;
var rivChanStimDisplay%;
var rivChanMasterStimDisplay%;
var rivChanSlaveStimDisplay%;
var rivChanFixptDisplay%;
var rivChanFixptWindowDisplay%;
var rivVCoeff;
var rivVConst;
var rivJoystickDisplayY;
var rivUnitCircleX[36];
var rivUnitCircleY[36];

' Controls

var rivIsPaused% := 0;
var rivStimHandle% := 0;
var rivCorrectResponse%;
var rivIncorrectResponse%;
var rivTStartStim;                  ' time at which stim is presented
var rivTStimSwap;                   ' in TRT trials this is the transition time from t->R and R->T
var rivTLastReward := -1;           ' time at which last reward was delivered - for maintainence rewards
var rivUniversalIntertrialTime;     ' time to wait between trials
var rivSwapTime;                    ' time to hold between stim swaps
var rivCompleteTrialFlag% := 0;
var rivSingleRewardGoodTrialFlag% := 1;

' trial types and associated vars
const trialtypeTrainingL%         := 0;
const trialtypeTrainingR%         := 1;
const trialtypeRivalryLR%         := 2;
const trialtypeRivalryRL%         := 3;
const trialtypeRivalryCatchLR%    := 4;
const trialtypeRivalryCatchRL%    := 5;
const trialtypeTrainingLRT%       := 6;
const trialtypeTrainingRRT%       := 7;
const trialtypeTrainingLFixed%    := 8;
const trialtypeTrainingRFixed%    := 9;
const trialtypeUnknown%     := -1;
var rivTrialTypeIndex%;                 ' this is the type returned by the trial generator
var rivTrialType%;                      ' rivTrialTypes%[rivTrialTypeIndex%]
const rivMaxTrialTypes% := 10;
var rivTrialTypes%[rivMaxTrialTypes%];
var rivNTrialTypes%;                    ' this is the total number of trial types for a single run; depends on settings
const rivMaxStimKey%        := 3;
var rivNStimKey%;
var rivStimKey$[rivMaxStimKey%];
var rivStimKeyIndex%;
var rivTrialTextMark$;

const rivTRTStateUnknown% := -1;
const rivTRTStateTraining1% := 0;
const rivTRTStateRivalry% := 1;
const rivTRTStateTraining2% := 2;
var rivTRTState% := rivTRTStateUnknown%;

' States - these constants define a particular state

const stateStartup%             :=  1;
const statePaused%              :=  2;
const stateTrialStart%          :=  3;
const stateBeep%                :=  4;
const stateWaitForReady%        :=  5;
const stateWaitForStimUp%       :=  6;
const stateWaitForResponse%     :=  7;
const stateCorrectResponse%     :=  8;
const stateMaintainResponse%    :=  9;
const stateMaxResponse%         :=  10;
const stateBreakResponse%       :=  11;
const stateWaitForStimOff%      :=  12;
const stateIntertrialWait%      :=  13;
const stateReadyFail%           :=  14;
const stateIncorrectResponse%   :=  15;
const stateNoResponse%          :=  16;
const stateQuit%                :=  17;
const stateDone%                :=  18;
const stateVSGWait%             :=  19;
const stateVSGConfirm%          :=  20;
const stateTrialCompleted%      :=  21;
const stateReadyHold%           :=  22;
const stateWaitForSwap%         :=  23;
const stateWaitForSwapResponse% :=  24;
const stateCorrectSwapResponse% :=  25;
const stateNoSwapResponse%      :=  26;
const stateWaitForFixpt%        :=  27;
const stateWaitForAcquisition%  :=  28;
const stateFixationHold%        :=  29;
const stateAcquisitionFail%     :=  30;
const stateFixationFail%        :=  31;
const stateRequestStim%         :=  32;
const stateRequestFixpt%        :=  33;
const stateWaitForFixptOff%     :=  34;
const stateFixationBroken%      :=  35;

' new states for dual vsg ops
const stateWaitForStimReset%    :=  40;
const stateWaitForRivalryResponse% := 41;

var iState% := stateStartup%;              ' This holds the current state

var tNow:=0;		    ' latest time for which there are values recorded. Used in IdleProcessing
var tLast:=-1;		    ' last time we checked for a trigger. 
var xEye, yEye;		    ' eye positions
var tLastUpdate:=-1;	' last time view was updated
var tMasterTrigger := -1;
var tSlaveTrigger := -1;
'var vTrigger;		    ' set by NextTime to indicate trigger transition
var tStateStart:=-1;	' time that present state started. Used to measure wait time, fixation time, etc. 
'var tLastTrigger:=-1;	' last trigger time. New triggers have to be greater than this
'var tTrigger:=-1;	    ' temp var for newly discovered trigger times
var doCorrectionTrial% := 0;    ' this is set to 1 when a trial fails and correction trials were requested
var isCorrectionTrial% := 0;    ' this is set to 1 when we are in a trial that is a correction trial


'===========================================================================================
'
' Script execution starts here. 
'
'===========================================================================================

LogInit(1);
InitJoystickX(rivChanJoy%,GetJoystickPortX%());


if RivalryDialog%() = 0 then
    halt;
endif

rivNTrialTypes% := 10;
rivTrialTypes%[0] := trialtypeTrainingL%;
rivTrialTypes%[1] := trialtypeTrainingR%;
rivTrialTypes%[2] := trialtypeRivalryLR%;
rivTrialTypes%[3] := trialtypeRivalryRL%;
rivTrialTypes%[4] := trialtypeRivalryCatchLR%;
rivTrialTypes%[5] := trialtypeRivalryCatchRL%;
rivTrialTypes%[6] := trialtypeTrainingLRT%;
rivTrialTypes%[7] := trialtypeTrainingRRT%;
rivTrialTypes%[8] := trialtypeTrainingLFixed%;
rivTrialTypes%[9] := trialtypeTrainingRFixed%;

if rivChooseTrialTypes% = 0 then
    var weights%[10];
    weights%[0] := rivNTrainingPerBlock%/2;
    weights%[1] := rivNTrainingPerBlock% - weights%[0];
    weights%[2] := rivNRivalryPerBlock%/2;
    weights%[3] := rivNRivalryPerBlock% - weights%[2];
    weights%[4] := rivNRivalryCatchPerBlock%/2;
    weights%[5] := rivNRivalryCatchPerBlock% - weights%[4];
    weights%[6] := rivNTrainingRTPerBlock%/2;
    weights%[7] := rivNTrainingRTPerBlock% - weights%[6];
    weights%[8] := rivNTrainingFixedPerBlock%/2;
    weights%[9] := rivNTrainingFixedPerBlock% - weights%[8];
    tgwInit(rivNTrialTypes%, weights%[0:rivNTrialTypes%], rivNBlocks%);
endif


' Stupid checks
if rivSwapMaxTime < rivSwapMinTime then
    Message("Duh! Swap max time must be greater than swap min time!");
    halt;
endif

' Sampling config
CreateSampleConfiguration();

' Prepare display windows, input channels, etc. 
InitializeWindows();

' Set up toolbar and launch
InitializeToolbar();




'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' CreateSampleConfiguration - Set up recording channels, dig input channels for VSG communication
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

proc CreateSampleConfiguration()
	var i%;
    
	SampleClear(); 'Set standard sampling state
	SampleAutoComment(0); 'Prompt for comment after sampling
	SampleAutoCommit(60); 'Seconds between each file commit
    
    FilePathSet(GetDataPathRoot$() + "\\" + GetDataSetName$(), 3);
    FilePathSet(GetDataPathRoot$() + "\\" + GetDataSetName$(), 1);
    SampleAutoName$(dataCellName$ + "_riv_000");
	SampleAutoFile(1);
    
    ' Text mark channel for trial info
    SampleTextMark(200);
    
	'Communication channels for receiving VSG signals - note, the hardware ports may have been changed since the last time this was run -jj 1/2021
    
	SampleEvent(rivChanMasterVSGReady%, 1, 2, 3600); 'Trigger channel, level
	SampleComment$(rivChanMasterVSGReady%, "M RDY");
	SampleTitle$(rivChanMasterVSGReady%, "M RDY");
    
	SampleEvent(rivChanSlaveVSGReady%, 5, 2, 3600); 'Trigger channel, level
	SampleComment$(rivChanSlaveVSGReady%, "S RDY");
	SampleTitle$(rivChanSlaveVSGReady%, "S RDY");
    
	SampleEvent(rivChanMasterPage%, 0, 1, 3600); 'Trigger channel, level
	SampleComment$(rivChanMasterPage%, "M Page");
	SampleTitle$(rivChanMasterPage%, "M Page");
    
	SampleEvent(rivChanSlavePage%, 4, 1, 3600); 'Trigger channel, level
	SampleComment$(rivChanSlavePage%, "S Page");
	SampleTitle$(rivChanSlavePage%, "S Page");
    
	SampleEvent(rivChanMasterGrating%, 2, 2, 3600); 'Trigger channel, level
	SampleComment$(rivChanMasterGrating%, "M Grating");
	SampleTitle$(rivChanMasterGrating%, "M Grating");
    
	SampleEvent(rivChanSlaveGrating%, 6, 2, 3600); 'Trigger channel, level
	SampleComment$(rivChanSlaveGrating%, "S Grating");
	SampleTitle$(rivChanSlaveGrating%, "S Grating");
    
    
    ' Joystick channel
	SampleWaveform(rivChanJoy%, GetJoystickPortX%(), 1000);
	SampleTitle$(rivChanJoy%, "Joy");
    
    ' Eye signals
	SampleWaveform(rivChanEyeX%, GetEyeXPort%(), 1000);
	SampleTitle$(rivChanEyeX%, "Eye X");
	SampleWaveform(rivChanEyeY%, GetEyeYPort%(), 1000);
	SampleTitle$(rivChanEyeY%, "Eye Y");
    
    ' Electrodes, if any.
    for i% := 0 to 7 do
        if rivElectrodes%[i%] = 1 then
            SampleWaveMark(i% + 1, i%, 2000, 34, 15, 28000); 
        endif
    next
    
    ' Sequencer file
	SampleSequencer(script$ + "RivalryDualVSG.pls");
	SampleOptimise(2, 2, 2, 2, 50);  'Set optimise mode (do this last)
	SampleMode(1); 'Continuous sampling

end;




'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' InitilizeToolbar - prepare toolbar buttons. Note that the idle processing function (ToolbarSet(0, blah, blah)) is 
' not set here. That's done when the user hits the start button.
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

proc InitializeToolbar()

	View(App(8)).WindowVisible(0);	'Hide the standard sample bar
	ToolbarVisible(1);
'	UpdateToolbarText();
	ToolbarSet(1,"Sample start",Start%);
	ToolbarSet(2,"Sample stop", Stop%);
	ToolbarSet(3,"Juice", Juice%);
	ToolbarSet(4,"Pause stimuli",Pause%);
	ToolbarSet(5,"Resume stimuli",Resume%);
	ToolbarSet(6,"Quit",Quit%);
	ToolbarEnable(2,0);
	ToolbarEnable(4,0);
	ToolbarEnable(5,0);
	Toolbar("Go",0x3ff);

end;



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' InitilizeWindows - Open data file, set up windows for online display.
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

proc InitializeWindows()
    var i%;
	var twopi;
    ' These set the max and min window dimensions. They are also used to scale the joystick 
    ' position to the xy display, so if you change the size of the window, do it by changing
    ' these vars!
    var xyXMin := -20;
    var xyXMax := 20;
    var xyYMin := -15;
    var xyYMax := 15;
    var lh, cl, ch, rl;
    rivJoystickDisplayY := -12;     ' y coord in xy window where joystick position is shown. 
    
	'Open the data sampling window
	rivWindowData% := FileNew(0,4);
	Window(0,48,100,95);
    XRange(0, 30);
	View(rivWindowData%).WindowVisible(1);

	'Open an XY view to display eye position
	rivWindowXY% := FileNew(12);
	XRange(xyXMin, xyXMax);
	YRange(-2, xyYMin, xyYMax);
	XYDrawMode(0,5,0);
	WindowVisible(1);
	Window(0, 0, 100, 47);
	XYColour(1, 16);
	XYSize(1, -1);
    
	'Create a new channel in the XY view to show the monitor's location
	rivChanMonitor% := XYSetChan(0);
	XYColour(rivChanMonitor%, 13);
	XYDrawMode(rivChanMonitor%, 3, 1);
	XYJoin(rivChanMonitor%, 2);
	XYAddData(rivChanMonitor%, -9, -7);
	XYAddData(rivChanMonitor%, 9, -7);
	XYAddData(rivChanMonitor%, 9, 7);
	XYAddData(rivChanMonitor%, -9, 7);
    
    ' Set up joystick range numbers
'    lh := GetJoystickLeftHigh();
'    cl := GetJoystickCenterLow();
'    ch := GetJoystickCenterHigh();
'    rl := GetJoystickRightLow();
    'Updated for new joystick code, 1/2/24 -jj
    lh := jsC2L;
    cl := jsL2C;
    ch := jsR2C;
    rl := JSC2R;
    
    ' We'll take the joystick voltage 'v' (which should be between 1 and 4volts) and 
    ' convert it for display in the xy window like this:
    ' x coord = v * rivVCoeff + rivVConst;
    
    rivVCoeff := (xyXMax - xyXMin)/3;
    rivVConst := -2.5 * rivVCoeff;
    
    rivChanJoystickRangeL% := XYSetChan(0);
    XYColour(rivChanJoystickRangeL%, 13);
    XYSize(rivChanJoystickRangeL%, 2);
    XYJoin(rivChanJoystickRangeL%, 1);
    XYDrawMode(rivChanJoystickRangeL%, 4, 3);
    XYAddData(rivChanJoystickRangeL%, xyXMin, rivJoystickDisplayY+1);
    XYAddData(rivChanJoystickRangeL%, lh * rivVCoeff + rivVConst, rivJoystickDisplayY+1);
    
    rivChanJoystickRangeC% := XYSetChan(0);
    XYColour(rivChanJoystickRangeC%, 13);
    XYSize(rivChanJoystickRangeC%, 2);
    XYJoin(rivChanJoystickRangeC%, 1);
    XYDrawMode(rivChanJoystickRangeC%, 4, 3);
    XYAddData(rivChanJoystickRangeC%, cl * rivVCoeff + rivVConst, rivJoystickDisplayY+1);
    XYAddData(rivChanJoystickRangeC%, ch * rivVCoeff + rivVConst, rivJoystickDisplayY+1);
    
    rivChanJoystickRangeR% := XYSetChan(0);
    XYColour(rivChanJoystickRangeR%, 13);
    XYSize(rivChanJoystickRangeR%, 2);
    XYJoin(rivChanJoystickRangeR%, 1);
    XYDrawMode(rivChanJoystickRangeR%, 4, 3);
    XYAddData(rivChanJoystickRangeR%, rl * rivVCoeff + rivVConst, rivJoystickDisplayY+1);
    XYAddData(rivChanJoystickRangeR%, xyXMax, rivJoystickDisplayY+1);
    
    
    ' this channel is for a symbol representing the actual joystick position
    rivChanJoystickPos% := XYSetChan(0);
    XYColour(rivChanJoystickPos%, 11);
    XYDrawMode(rivChanJoystickPos%, 1, 8);
    XYDrawMode(rivChanJoystickPos%, 2, 10);
    XYSize(rivChanJoystickPos%, -1);
    
    ' this channel is for displaying the stimulus
    rivChanStimDisplay% := XYSetChan(0);
    XYColour(rivChanStimDisplay%, 8);
    XYDrawMode(rivChanStimDisplay%, 2, 0);
    XYDrawMode(rivChanStimDisplay%, 3, 0);
    XYJoin(rivChanStimDisplay%, 2);
    XYSize(rivChanStimDisplay%, 36);
    
    ' this channel is for displaying the MASTER stimulus
    rivChanMasterStimDisplay% := XYSetChan(0);
    XYColour(rivChanMasterStimDisplay%, 8);
    XYDrawMode(rivChanMasterStimDisplay%, 2, 0);
    XYDrawMode(rivChanMasterStimDisplay%, 3, 0);
    XYJoin(rivChanMasterStimDisplay%, 2);
    XYSize(rivChanMasterStimDisplay%, 36);
    
    ' this channel is for displaying the SLAVE stimulus
    rivChanSlaveStimDisplay% := XYSetChan(0);
    XYColour(rivChanSlaveStimDisplay%, 8);
    XYDrawMode(rivChanSlaveStimDisplay%, 2, 0);
    XYDrawMode(rivChanSlaveStimDisplay%, 3, 0);
    XYJoin(rivChanSlaveStimDisplay%, 2);
    XYSize(rivChanSlaveStimDisplay%, 36);
    
    ' display fixpt
    rivChanFixptDisplay% := XYSetChan(0);
    XYColour(rivChanFixptDisplay%, 17);
   	XYDrawMode(rivChanFixptDisplay%, 1, 0);
    XYSize(rivChanFixptDisplay%, 1);
    
    ' display fixpt window
    rivChanFixptWindowDisplay% := XYSetChan(0);
    XYColour(rivChanFixptWindowDisplay%, 17);
   	XYDrawMode(rivChanFixptWindowDisplay%, 2, 0);
   	XYDrawMode(rivChanFixptWindowDisplay%, 3, 0);
    XYJoin(rivChanFixptWindowDisplay%, 2);
    XYSize(rivChanFixptWindowDisplay%, 36);
    
    
	twopi := 2.0*4.0*ATan(1.0);
	for i% := 0 to 35 do
		rivUnitCircleX[i%] := Cos(i% * twopi/36.0);
		rivUnitCircleY[i%] := Sin(i% * twopi/36.0);
	next;

    
end;


' DisplayStim
'
' Draws stuff in online XY display. 
' iOn% values and their meanings:
' 0 : Erase all
' 1 : Display stim
' 2 : Display fixpt and window

proc DisplayStim(iOn%)
    var circleX[36];
    var circleY[36];
    
    docase
    case iOn% = 0 then
        View(rivWindowXY%).XYDelete(rivChanStimDisplay%);        
        View(rivWindowXY%).XYDelete(rivChanFixptDisplay%);        
        View(rivWindowXY%).XYDelete(rivChanFixptWindowDisplay%);                
        ToolbarText("");
    case iOn% = 1 then
        View(rivWindowXY%).XYDelete(rivChanStimDisplay%);
        if rivCorrectResponse% = JSLeft% then
            ArrConst(circleX[], rivUnitCircleX[]);
            ArrMul(circleX[], rivLeftGratingD/2);
            ArrAdd(circleX[], rivLeftGratingX);
            ArrConst(circleY[], rivUnitCircleY[]);
            ArrMul(circleY[], rivLeftGratingD/2);
            ArrAdd(circleY[], rivLeftGratingY);
        else
            ArrConst(circleX[], rivUnitCircleX[]);
            ArrMul(circleX[], rivRightGratingD/2);
            ArrAdd(circleX[], rivRightGratingX);
            ArrConst(circleY[], rivUnitCircleY[]);
            ArrMul(circleY[], rivRightGratingD/2);
            ArrAdd(circleY[], rivRightGratingY);
        endif
        View(rivWindowXY%).XYAddData(rivChanStimDisplay%, circleX[], circleY[]);
        docase
        case rivTrialType% = trialtypeTrainingL% then
            if rivCorrectResponse% = JSLeft% then
                ToolbarText("TrainingL: LL");
            else
                ToolbarText("TrainingL: RR");
            endif
        case rivTrialType% = trialtypeTrainingR% then
            if rivCorrectResponse% = JSLeft% then
                ToolbarText("TrainingR: LL");
            else
                ToolbarText("TrainingR: RR");
            endif
        case rivTrialType% = trialtypeRivalryLR% then
            ToolbarText("Rivalry: LR");
        case rivTrialType% = trialtypeRivalryRL% then
            ToolbarText("Rivalry: RL");
        case rivTrialType% = trialtypeRivalryCatchLR% then
            docase
            case rivCorrectResponse% = JSLeft% then
                ToolbarText("RivalryCatch: LL");
            case rivCorrectResponse% = JSRight% then
                ToolbarText("RivalryCatch: RR");
            else
                ToolbarText("RivalryCatch: LR");
            endcase
        case rivTrialType% = trialtypeRivalryRL% then
            docase
            case rivCorrectResponse% = JSLeft% then
                ToolbarText("RivalryCatch: LL");
            case rivCorrectResponse% = JSRight% then
                ToolbarText("RivalryCatch: RR");
            else
                ToolbarText("RivalryCatch: RL");
            endcase
        endcase
    case iOn% = 2 then
        View(rivWindowXY%).XYDelete(rivChanFixptDisplay%);        
        View(rivWindowXY%).XYDelete(rivChanFixptWindowDisplay%);                
        ArrConst(circleX[], rivUnitCircleX[]);
        ArrMul(circleX[], rivFixationWindowD/2);
        ArrAdd(circleX[], rivFixationX);
        ArrConst(circleY[], rivUnitCircleY[]);
        ArrMul(circleY[], rivFixationWindowD/2);
        ArrAdd(circleY[], rivFixationY);
        View(rivWindowXY%).XYAddData(rivChanFixptDisplay%, rivFixationX, rivFixationY);
        View(rivWindowXY%).XYAddData(rivChanFixptWindowDisplay%, circleX[], circleY[]);
    endcase
    return;
end

proc DrawHorizontalStim(chan%, xll, yll, width, height)
    return;
end

proc DrawVerticalStim(chan%, xll, yll, width, height)
    return;
end



func IdleProcessing%()
	var iStatus% := 1;	
    var iLoop% := 0;        ' States can set this to 1 if we stay in state loop
    var joystickPosition%;
    var joystickVoltage;
    
	tNow := View(rivWindowData%).MaxTime();
    
    ' Get and display joystick voltage and position
    View(rivWindowData%);
    joystickPosition% := GetJoystickPositionX%(joystickVoltage);
    View(rivWindowXY%).XYAddData(rivChanJoystickPos%, joystickVoltage * rivVCoeff + rivVConst, rivJoystickDisplayY);
    
    if tNow > 0.005 then
        xEye := ChanMeasure(rivChanEyeX%, 2, tNow, tNow-.005) * DegreesPerVoltX;
        yEye := ChanMeasure(rivChanEyeY%, 2, tNow-.001, tNow-.006) * DegreesPerVoltY;
        View(rivWindowXY%).XYAddData(1, xEye, yEye);
    endif
    
    repeat
        iLoop% := 0;
        docase 
        case iState% = stateStartup% then
            
            LogStatus("stateStartup", "Starting up.");
            ChangeStateTo(stateVSGWait%, tNow);
            iLoop% := 1;
            
        case iState% = stateVSGWait% then
            
            var trm, tfm, trs, tfs;
            if FindPulseUp%(rivChanMasterVSGReady%, tStateStart, trm, tfm) = 1 and FindPulseUp%(rivChanSlaveVSGReady%, tStateStart, trs, tfs) = 1 then
                LogStatus("stateVSGWait", "Got ready pulse from both vsg cards.");
                ChangeStateTo(stateTrialStart%, tNow);
                iLoop% := 1;
            endif;
            
        case iState% = stateTrialStart% then
            
            var s%;
            s% := PrepareTrial%();
            if s% = 1 then
                ChangeStateTo(stateBeep%, tNow);
            else
                ChangeStateTo(stateDone%, tNow);
            endif
            iLoop% := 1;
            
        case iState% = stateBeep% then
            
            if rivUseBeep% <> 0 then
                Sound("ding", 1);
            endif
            Yield(.5);
            ChangeStateTo(stateWaitForReady%, tNow);
            iLoop% := 1;
            
        case iState% = stateWaitForReady% then
            
            ' Wait for joystick to be positioned in the center. 
            docase
            case joystickPosition% = JSCenter% then
                LogStatus("WaitForReady", "Joystick ready.");
                ChangeStateTo(stateReadyHold%, tNow);
            case tNow - tStateStart > rivMaxWaitForReadyTime then
                LogStatus("WaitForReady", "Ready wait time expired.");
                ChangeStateTo(stateReadyFail%, tNow);
            endcase
            iLoop% := 0;
            
        case iState% = stateReadyHold% then
            
            iLoop% := 0;
            docase
            case tNow - tStateStart > rivReadyHoldTime then
                LogStatus("stateReadyHold", "Ready hold time met.");
                if rivReadyHoldRewardSizeMS% > 0 then
                    'DeliverReward(rivReadyHoldRewardSize%, tNow);
                    Reward(rivReadyHoldRewardSizeMS%, tNow);
                    Yield(.1);
                endif
                if rivUseFixation% = 1 then
                    ChangeStateTo(stateRequestFixpt%, tNow);
                    iLoop% := 1;
                else
                    ChangeStateTo(stateRequestStim%, tNow);
                    iLoop% := 1;
                endif
            case joystickPosition% <> JSCenter% then
                LogStatus("stateReadyHold", "Joystick not in ready position.");
                ChangeStateTo(stateReadyFail%, tNow);
                iLoop% := 1;
            endcase
            
        case iState% = stateRequestFixpt% then
            
            LogStatus("stateRequestFixpt", "Request fixpt.");
            SafeSampleKey(rivStimKey$[rivStimKeyIndex%]);
            ChangeStateTo(stateWaitForFixpt%, tNow);

        case iState% = stateWaitForFixpt% then
            
                ' TODO: Check for js ready here? Exit to what state?
            iLoop% := 0;
            docase
            case FindEvent%(rivChanMasterPage%, tStateStart, tMasterTrigger) = 1 and FindEvent%(rivChanSlavePage%, tStateStart, tSlaveTrigger) = 1 then
                ' Fixpt is up
                LogStatus("stateWaitForFixpt", "Fixpt is up.");
                DisplayStim(2);
                ChangeStateTo(stateWaitForAcquisition%, tNow);
                iLoop% := 1;
            endcase
                
        case iState% = stateWaitForAcquisition% then
            
            ' Waiting for eye to fall in fixation window. Joystick must remain in ready position.
            docase
            case joystickPosition% <> JSCenter% then
                LogStatus("stateWaitForAcquisition", "Joystick not in ready position.");
                ChangeStateTo(stateAcquisitionFail%, tNow);
            case Looking%(xEye, yEye) = 1 then
                LogStatus("stateWaitForAcquisition", "Eye in fixation window.");
                ChangeStateTo(stateFixationHold%, tNow);
            case tNow - tStateStart > rivMaxAcquisitionTime then
                LogStatus("stateWaitForAcquisition", "Acquisition time is up!");
                ChangeStateTo(stateAcquisitionFail%, tNow);
            else
                iLoop% := 0;
            endcase
            
        case iState% = stateFixationHold% then
            
            iLoop% := 0;
            docase
            case joystickPosition% <> JSCenter% then
                LogStatus("stateFixationHold", "Joystick not in ready position.");
                ChangeStateTo(stateFixationFail%, tNow);
            case Looking%(xEye, yEye) <> 1 then
                LogStatus("stateFixationHold", "Eye not in fixation window.");
                ChangeStateTo(stateFixationFail%, tNow);
            case tNow - tStateStart > rivFixationHoldTime then
                LogStatus("stateFixationHold", "Done.");
                ChangeStateTo(stateRequestStim%, tNow);
            else
                iLoop% := 0;
            endcase
                
        case iState% = stateRequestStim% then
            
            LogStatus("stateRequestStim", "Request stim");
            SafeSampleKey("g");
            ChangeStateTo(stateWaitForStimUp%, tNow);
            iLoop% := 0;
                
        case iState% = stateAcquisitionFail% then
            
            rivUniversalIntertrialTime := rivAcquisitionFailWaitTime;
            SafeSampleKey("X");
            ChangeStateTo(stateWaitForFixptOff%, tNow);
            iLoop% := 0;
            
        case iState% = stateFixationFail% then
            
            rivUniversalIntertrialTime := rivFixationFailWaitTime;
            SafeSampleKey("X");
            ChangeStateTo(stateWaitForFixptOff%, tNow);
            iLoop% := 0;
            
        case iState% = stateFixationBroken% then
            
            rivUniversalIntertrialTime := rivFixationFailWaitTime;
            SafeSampleKey("X");
            ChangeStateTo(stateWaitForStimOff%, tNow);
            iLoop% := 0;
            
        case iState% = stateReadyFail% then
            
            rivCtrReadyFail% += 1;
            rivUniversalIntertrialTime := rivReadyFailWaitTime;
            ChangeStateTo(stateIntertrialWait%, tNow);
            iLoop% := 0;
            
        case iState% = stateWaitForStimUp% then
            
            ' Waiting for stim signals on channel rivChanMasterGrating% and rivChanSlaveGrating%
            if FindEdge%(rivChanMasterGrating%, tStateStart, tMasterTrigger) > -1 and FindEdge%(rivChanSlaveGrating%, tStateStart, tSlaveTrigger) > -1 then
				LogStatus("WaitForStimUp", "Stimulus is up.");
                DisplayStim(1);
                rivTStartStim := tMasterTrigger;
                docase
                case rivTrialType% = trialtypeTrainingL% or rivTrialType% = trialtypeTrainingR% or 
                     rivTrialType% = trialtypeTrainingLFixed% or rivTrialType% = trialtypeTrainingRFixed% then
                    ChangeStateTo(stateWaitForResponse%, tMasterTrigger);
                case rivTrialType% = trialtypeRivalryLR% or rivTrialType% = trialtypeRivalryRL% then
                    ChangeStateTo(stateWaitForRivalryResponse%, tMasterTrigger);
                    rivLastRivalryResponse% := JSUndefined%;
                case rivTrialType% = trialtypeRivalryCatchLR% or rivTrialType% = trialtypeRivalryCatchRL% then
                    ChangeStateTo(stateWaitForRivalryResponse%, tMasterTrigger);
                    rivLastRivalryResponse% := JSUndefined%;
                case rivTrialType% = trialtypeTrainingLRT% or rivTrialType% = trialtypeTrainingRRT% then
                    docase 
                    case rivTRTState% = rivTRTStateTraining1% or rivTRTState% = rivTRTStateTraining2% then
                        LogInfo("ChangeStateTo(stateWaitForResponse%, tMasterTrigger);");
                        ChangeStateTo(stateWaitForResponse%, tMasterTrigger);
                    case rivTRTState% = rivTRTStateRivalry% then
                        LogInfo("ChangeStateTo(stateWaitForRivalryResponse%, tMasterTrigger);");
                        ChangeStateTo(stateWaitForRivalryResponse%, tMasterTrigger);
                        rivLastRivalryResponse% := JSUndefined%;
                    else
                        LogError("WaitForStimUp", "Unknown Training->Rivalry->Training state (" + str$(rivTRTState%) + ")");
                        ChangeStateTo(stateDone%, tNow);
                    endcase
                else
                    LogError("WaitForStimUp", "Unknown trial type (" + str$(rivTrialType%) + ")");
                    ChangeStateTo(stateDone%, tNow);
                endcase
			endif;
            iLoop% := 0;
            
        case iState% = stateWaitForRivalryResponse% then
            
            docase
            case rivUseFixation% = 1 and Looking%(xEye, yEye) <> 1 then
                LogStatus("WaitForRivalryResponse", "Eye not in fixation window.");
                ChangeStateTo(stateFixationBroken%, tNow);
            case tNow-rivTStartStim > rivMaxStimTime then
                LogStatus("WaitForRivalryResponse", "Max time is up. Nice job.");
                SafeSampleKey("X");
                rivCompleteTrialFlag% := 1;
                ChangeStateTo(stateWaitForStimOff%, tNow);
            case (rivTrialType% = trialtypeRivalryCatchLR% or rivTrialType% = trialtypeRivalryCatchRL%) and tNow-tStateStart > rivRivalryCatchSwitchTime then
                LogStatus("WaitForRivalryResponse", "Switch time is here.");
                
                ' Determine what to switch to based on current joystick position. If she's indicating left, 
                ' switch to right; if she's indicating right, switch to left. If she's indicating neither....???TODO
                
                docase 
                case joystickPosition% = JSLeft% then
                    rivCorrectResponse% := JSRight%;
                    rivIncorrectResponse% := JSLeft%;
                    rivStimKey$[0] := "A";
                    rivStimKey$[1] := "5";
                    rivStimKeyIndex% := 0;
                    rivNStimKey% := 2;
                case joystickPosition% = JSRight% then
                    rivCorrectResponse% := JSLeft%;
                    rivIncorrectResponse% := JSRight%;
                    rivStimKey$[0] := "5";
                    rivStimKey$[1] := "A";
                    rivStimKeyIndex% := 0;
                    rivNStimKey% := 2;
                else
                    LogWarn("WaitForRivalryResponse", "No Joystick response at catch trial switch time!");
                    rivCorrectResponse% := JSLeft%;
                    rivIncorrectResponse% := JSRight%;
                    rivStimKey$[0] := "5";
                    rivStimKey$[1] := "A";
                    rivStimKeyIndex% := 0;
                    rivNStimKey% := 2;
                endcase
                SafeSampleKey(rivStimKey$[rivStimKeyIndex%]);
                UpdateSwapValues(0);
                ChangeStateTo(stateWaitForSwap%, tNow);
                
            case (rivTrialType% = trialtypeTrainingLRT% or rivTrialType% = trialtypeTrainingRRT%) and rivTRTState% = rivTRTStateRivalry% and tNow - rivTStimSwap > rivTRTTime2 then
                ' Time to transition to second training phase
                rivTRTState% := rivTRTStateTraining2%;
                LogStatus("stateWaitForRivalryResponse", "Training->Rivalry->Training: transition back to training at " + str$(tNow) + " swap time " + str$(rivTStimSwap) + " t2=" + str$(rivTRTTime2));
                ' Choose stim key to force a change. Take into consideration the current joystick pos and the trial type to make this choice.
                docase 
                case joystickPosition% = JSLeft% then
                    rivCorrectResponse% := JSRight%;
                    rivIncorrectResponse% := JSLeft%;
                    rivStimKey$[0] := "A";
                    rivStimKey$[1] := "5";
                    rivStimKeyIndex% := 0;
                    rivNStimKey% := 2;
                case joystickPosition% = JSRight% then
                    rivCorrectResponse% := JSLeft%;
                    rivIncorrectResponse% := JSRight%;
                    rivStimKey$[0] := "5";
                    rivStimKey$[1] := "A";
                    rivStimKeyIndex% := 0;
                    rivNStimKey% := 2;
                else
                    LogWarn("WaitForRivalryResponse", "No Joystick response at second training switch time!");
                    rivCorrectResponse% := JSLeft%;
                    rivIncorrectResponse% := JSRight%;
                    rivStimKey$[0] := "5";
                    rivStimKey$[1] := "A";
                    rivStimKeyIndex% := 0;
                    rivNStimKey% := 2;
                endcase
                SafeSampleKey(rivStimKey$[rivStimKeyIndex%]);
                UpdateSwapValues(0);
                ChangeStateTo(stateWaitForSwap%, tNow);
                
            case rivLastRivalryResponse% = JSUndefined% and (joystickPosition% = JSLeft% or joystickPosition% = JSRight%) then
                rivLastRivalryResponse% := joystickPosition%;
                'DeliverReward(rivResponseCorrectRewardSize%, tNow);
                Reward(rivResponseCorrectRewardSizeMS%, tNow);
            case ((rivLastRivalryResponse% = JSLeft% and joystickPosition% = JSRight%) or (rivLastRivalryResponse% = JSRight% and joystickPosition% = JSLeft%)) and tNow-rivTLastReward > rivRivalryRewardHoldoff  then
                rivLastRivalryResponse% := joystickPosition%;
                'DeliverReward(rivSwapRewardSize%, tNow);
                Reward(rivSwapRewardSizeMS%, tNow);
            case rivLastRivalryResponse% = joystickPosition% and tNow-rivTLastReward > rivMaintainResponseRewardWait then
                Reward(rivMaintainResponseRewardSizeMS%, tNow);
                'DeliverReward(rivMaintainResponseRewardSize%, tNow);
            endcase
                
        case iState% = stateWaitForResponse% then
            
            ' Waiting for response. PrepareTrial() sets the global var rivCorrectResponse% (and rivIncorrectResponse%) 
            ' to either JSLeft% or JSRight%.
            iLoop% := 1;
            docase
            case rivUseFixation% = 1 and Looking%(xEye, yEye) <> 1 then
                LogStatus("stateWaitForResponse", "Eye not in fixation window.");
                ChangeStateTo(stateFixationBroken%, tNow);
            case joystickPosition% = rivCorrectResponse% then
                LogStatus("stateWaitForResponse", "Correct response!");
                ChangeStateTo(stateCorrectResponse%, tNow);
                iLoop% := 1;
            case joystickPosition% = rivIncorrectResponse% then
                LogStatus("stateWaitForResponse", "Incorrect response!");
                ChangeStateTo(stateIncorrectResponse%, tNow);
                iLoop% := 1;
            case tNow - tStateStart > rivMaxResponseTime then
                LogStatus("stateWaitForResponse", "No response!");
                ChangeStateTo(stateNoResponse%, tNow);
                iLoop% := 1;
            else
                iLoop% := 0;
            endcase
            
        case iState% = stateNoResponse% then
            
            ' djs In the event that there is no response we will actually end the trial, 
            ' even when the single reward flag is set. 
            
            rivSingleRewardGoodTrialFlag% := 0;
            LogStatus("stateNoResponse", "Trial ended - no response.");
            
            doCorrectionTrial% := 1;
            rivCtrNoResponse% += 1;
            SafeSampleKey("X");
            rivUniversalIntertrialTime := rivResponseFailWaitTime;
            ChangeStateTo(stateWaitForStimOff%, tNow);
            iLoop% := 0;
            
        case iState% = stateCorrectResponse% then
            
            doCorrectionTrial% := 0;
            rivCtrCorrect% += 1;
            Reward(rivResponseCorrectRewardSizeMS%, tNow);
            'DeliverReward(rivResponseCorrectRewardSize%, tNow);
            UpdateSwapValues(0);
            ChangeStateTo(stateMaintainResponse%, tNow);
            iLoop% := 0;
            
        case iState% = stateIncorrectResponse% then
            
            doCorrectionTrial% := 1;
            rivCtrIncorrect% += 1;
            if rivUseSingleReward% = 1 then
                rivSingleRewardGoodTrialFlag% := 0;
                UpdateSwapValues(0);
                ChangeStateTo(stateMaintainResponse%, tNow);
            else
                SafeSampleKey("X");
                rivUniversalIntertrialTime := rivResponseIncorrectWaitTime;
                ChangeStateTo(stateWaitForStimOff%, tNow);
            endif
            iLoop% := 0;
            
        case iState% = stateMaintainResponse% then
            
            ' If subject maintains correct response for specified amount of time, deliver another
            ' reward, loop again. Upper time limit on this loop applies. 
            
            iLoop% := 1;
            docase
            case rivUseFixation% = 1 and Looking%(xEye, yEye) <> 1 then
                LogStatus("stateMaintainResponse", "Eye not in fixation window.");
                ChangeStateTo(stateFixationBroken%, tNow);
            case joystickPosition% <> rivCorrectResponse% then
                
                doCorrectionTrial% := 1;
                if rivUseSingleReward% = 1 then
                    if rivSingleRewardGoodTrialFlag% <> 0 then
                        LogStatus("stateMaintainResponse", "Correct response broken! Continuing trial...");
                    endif
                    rivSingleRewardGoodTrialFlag% := 0;
                    ' We have to check here whether the max time has been reached. When rivUseSingleReward is 
                    ' zero (the bottom half of this if-then-else block) the trial ends here because
                    ' of the incorrect response. When rivUseSingleReward is set however, the trial wouldn't
                    ' end. Without a test for rivMaxStimTime the trial can go on indefinitely, 
                    ' or until fixation is broken or until a correct response is made. 
                    if tNow - rivTStartStim > rivMaxStimTime then
                        LogStatus("stateMaintainResponse", "Time up: " + str$(tNow - rivTStartStim) + " > " + str$(rivMaxStimTime) + "\n");
                        rivUniversalIntertrialTime := rivResponseBrokenWaitTime;
                        SafeSampleKey("X");
                        ChangeStateTo(stateWaitForStimOff%, tNow);
                    endif
                else
                    LogStatus("stateMaintainResponse", "Correct response broken!");
                    rivUniversalIntertrialTime := rivResponseBrokenWaitTime;
                    SafeSampleKey("X");
                    ChangeStateTo(stateWaitForStimOff%, tNow);
                endif
                
                iLoop% := 0;
            case (rivTrialType% = trialtypeTrainingL% or rivTrialType% = trialtypeTrainingR% or 
                rivTrialType% = trialtypeTrainingLFixed% or rivTrialType% = trialtypeTrainingRFixed%) and 
                tNow - rivTStartStim > rivMaxStimTime then
                LogStatus("stateMaintainResponse", "Time up: " + str$(tNow - rivTStartStim) + " > " + str$(rivMaxStimTime) + "\n");
                rivUniversalIntertrialTime := rivMaxStimWaitTime;
                rivCompleteTrialFlag% := 1;
                SafeSampleKey("X");
                ChangeStateTo(stateWaitForStimOff%, tNow);
                iLoop% := 0;
            case (rivTrialType% = trialtypeTrainingLRT% or rivTrialType% = trialtypeTrainingRRT%) and rivTRTState% = rivTRTStateTraining1% and tNow - rivTStartStim > rivTRTTime1 then
                ' Time to transition to rivalry phase
                LogStatus("stateMaintainResponse", "Transition to rivalry at " + str$(tNow) + " start stim " + str$(rivTStartStim) + " t1=" + str$(rivTRTTime1));
                rivTRTState% := rivTRTStateRivalry%;
                rivStimKeyIndex% := 2;
                rivLastRivalryResponse% := joystickPosition%;
                SafeSampleKey(rivStimKey$[rivStimKeyIndex%]);
                ChangeStateTo(stateWaitForSwap%, tNow);
                iLoop% := 0;
            case (rivTrialType% = trialtypeTrainingLRT% or rivTrialType% = trialtypeTrainingRRT%) and rivTRTState% = rivTRTStateTraining2% and tNow - rivTStartStim > rivMaxStimTime then
                LogStatus("stateMaintainResponse", "Max response time reached. Training->Rivalry->Training trial completed at " + str$(tNow) + " swap time " + str$(rivTStimSwap) + " t3=" + str$(rivTRTTime3));
                rivUniversalIntertrialTime := rivMaxStimWaitTime;
                rivCompleteTrialFlag% := 1;
                SafeSampleKey("X");
                ChangeStateTo(stateWaitForStimOff%, tNow);
                iLoop% := 0;

            case joystickPosition% = rivCorrectResponse% then
                
                ' Check for maintenance reward
                if rivTLastReward > 0 and tNow - rivTLastReward > rivMaintainResponseRewardWait then
                    Reward(rivMaintainResponseRewardSizeMS%, tNow);
                    'DeliverReward(rivMaintainResponseRewardSize%, tNow);
                endif
                
                ' When trial type is Training->Fixed, test if the Fixed time threshold has passed, and if so
                ' set the next swap time to a REALLY long time from now. 
                if (rivTrialType% = trialtypeTrainingLFixed% or rivTrialType% = trialtypeTrainingRFixed%) and 
                    tNow - rivTStartStim > rivTFixedTime  and rivSwapTime < 9999 then
                    LogStatus("stateCorrectResponse", "Making stim fixed; no more swaps this trial.");
                    rivSwapTime := 99999;
                endif
                
                ' Now see if its time to swap the stimuli
                if  tNow - tStateStart > rivSwapTime then
                    LogStatus("stateMaintainResponse", "Request stim swap.");
                    rivStimKeyIndex% := 1 - rivStimKeyIndex%;
                    SafeSampleKey(rivStimKey$[rivStimKeyIndex%]);
                    UpdateSwapValues(1);
'                    DeliverReward(rivMaintainResponseRewardSize%);
                    ChangeStateTo(stateWaitForSwap%, tNow);
                endif
                
                iLoop% := 0;
            else
                LogError("stateMaintainResponse", "Unknown condition!!!");
                iLoop% := 0;
            endcase
            
        case iState% = stateWaitForSwap% then
            
            if FindEvent%(rivChanMasterPage%, tStateStart, tMasterTrigger) = 1 and 
                FindEvent%(rivChanSlavePage%, tStateStart, tSlaveTrigger) = 1 then
                rivTStimSwap := tMasterTrigger;
                LogStatus("stateWaitForSwap", "Swap detected.");
                DisplayStim(1);
                docase
                case rivTrialType% = trialtypeTrainingLRT% or rivTrialType% = trialtypeTrainingRRT% then
                    if rivTRTState% = rivTRTStateRivalry% then
                        ChangeStateTo(stateWaitForRivalryResponse%, tNow);
                    else
                        ChangeStateTo(stateWaitForSwapResponse%, tNow);
                    endif
                else
                    ChangeStateTo(stateWaitForSwapResponse%, tNow);
                endcase
                iLoop% := 0;
            endif
            
        case iState% = stateWaitForSwapResponse% then
            
            ' The stim has been swapped, and the value of rivCorrectResponse has been set to the 
            ' new stim position. We anxiously await a response.
            
            iLoop% := 1;
            docase
            case rivUseFixation% = 1 and Looking%(xEye, yEye) <> 1 then
                LogStatus("stateWaitForSwapResponse", "Eye not in fixation window.");
                ChangeStateTo(stateFixationBroken%, tNow);
            case joystickPosition% = rivCorrectResponse% then
                LogStatus("stateWaitForSwapResponse", "Correct response!");
                ChangeStateTo(stateCorrectSwapResponse%, tNow);
                iLoop% := 1;
            case tNow - tStateStart > rivSwapMaxResponseTime then
                if rivUseSingleReward% = 1 then
                    if rivSingleRewardGoodTrialFlag% <> 0 then
                        LogStatus("stateNoSwapResponse", "No response! Continuing trial anyways...");
                    endif
                    rivSingleRewardGoodTrialFlag% := 0;
                    if tNow - rivTStartStim > rivMaxStimTime then
                        LogStatus("stateNoSwapResponse", "Time up: " + str$(tNow - rivTStartStim) + " > " + str$(rivMaxStimTime) + "\n");
                        rivUniversalIntertrialTime := rivResponseBrokenWaitTime;
                        SafeSampleKey("X");
                        ChangeStateTo(stateWaitForStimOff%, tNow);
                    endif
                else
                    LogStatus("stateWaitForSwapResponse", "No response!");
                    ChangeStateTo(stateNoSwapResponse%, tNow);
                    iLoop% := 1;
                endif
                
                iLoop% := 0;
            else
                iLoop% := 0;
            endcase
            
        case iState% = stateCorrectSwapResponse% then
            
            LogInfo("stateCorrectSwapResponse% reward size = " + str$(rivSwapRewardSizeMS%) + " tnow = " + str$(tNow));
            Reward(rivSwapRewardSizeMS%, tNow);
            'DeliverReward(rivSwapRewardSize%, tNow);
            ChangeStateTo(stateMaintainResponse%, tNow);
            iLoop% := 0;
            
        case iState% = stateNoSwapResponse% then
            
            LogStatus("stateNoSwapResponse", "No response! Trial done.");
            SafeSampleKey("X");
            rivUniversalIntertrialTime := rivResponseBrokenWaitTime;
            ChangeStateTo(stateWaitForStimOff%, tNow);
            iLoop% := 0;

        case iState% = stateWaitForStimOff% then
            
            ' Waiting for stim signal off channel StimChannel%
            iLoop% := 0;
            if FindEvent%(rivChanMasterPage%, tStateStart, tMasterTrigger) = 1 and 
                FindEvent%(rivChanSlavePage%, tStateStart, tSlaveTrigger) = 1 then
                if tStateStart-rivTStartStim > rivMinGoodTrialTime then
                    trialgenTrialIndexCompleted(rivTrialTypeIndex%);
                    LogStatus("stateVSGWaitForStimOff", "Stimulus is off. Good trial (" + str$(rivTrialTypeIndex%) + ")");
                else
                    LogStatus("stateVSGWaitForStimOff", "Stimulus is off. Not a good trial.");
                endif
                DisplayStim(0);
                if rivCompleteTrialFlag% = 1 and rivSingleRewardGoodTrialFlag% = 1 then
                    ' this only gives reward if "single reward" was checked in main dlg
                    ' For TrainingLRT and TrainingRRT type trials, there is an additional probability of reward - 
                    ' i.e. for some of those trials the reward will not be delivered. 
                    ' For all other trial types that prob is 100%, meaning the reward is always delivered. 
                    if rivTrialType% = trialtypeTrainingLRT% or rivTrialType% = trialtypeTrainingRRT% then
                        RewardBypass(rivSingleRewardMS%, tNow, rivSingleRewardProb%);
                    else
                        RewardBypass(rivSingleRewardMS%, tNow, 100);
                    endif
                endif
                SafeSampleKey("x");
                ChangeStateTo(stateWaitForStimReset%, tMasterTrigger);
                iLoop% := 0;
			endif;
            
        case iState% = stateWaitForStimReset% then
            
            ' Waiting for stim signals on channel rivChanMasterGrating% and rivChanSlaveGrating%
            iLoop% := 0;
            if FindEdge%(rivChanMasterGrating%, tStateStart, tMasterTrigger) > -1 and FindEdge%(rivChanSlaveGrating%, tStateStart, tSlaveTrigger) > -1 then
				LogStatus("stateVSGWaitForStimReset", "Stimulus reset.\n");
				ChangeStateTo(stateIntertrialWait%, tMasterTrigger);
                iLoop% := 1;
			endif;
            
        case iState% = stateWaitForFixptOff% then
            
            ' Waiting for stim signal off channel StimChannel%
            iLoop% := 0;
            if FindEvent%(rivChanMasterPage%, tStateStart, tMasterTrigger) = 1 and 
                FindEvent%(rivChanSlavePage%, tStateStart, tSlaveTrigger) = 1 then
				LogStatus("stateVSGWaitForFixptOff", "Fixpt is off.\n");
                DisplayStim(0);
				ChangeStateTo(stateIntertrialWait%, tMasterTrigger);
                iLoop% := 1;
			endif;
            
        case iState% = stateIntertrialWait% then
            
            ' Any states that exit to here should have set the universal intertrial wait time!
            iLoop% := 0;
            if tNow - tStateStart > rivUniversalIntertrialTime then
                ChangeStateTo(stateTrialCompleted%, tNow);
                iLoop% := 1;
            endif
            
        case iState% = stateTrialCompleted% then
            
            LogStatus("stateTrialCompleted", "Trial completed.");
            ' If correction trials are required, deal with that now....
            ChangeStateTo(stateTrialStart%, tNow);
            iLoop% := 1;
            
        case iState% = stateDone% then
            
            LogStatus("stateDone", "Reached done state. Calling Stop%()...\n");
            Stop%();
            iLoop% := 0;
            iStatus% := 0;
            
        else
            
            ' Unknown state!
            Message("Unknown state=" + str$(iState%));
            halt;
            
        endcase;
    until iLoop% = 0;
    
	tLast := tNow;
	return iStatus%;
end;


proc ChangeStateTo(stateTo%, tStart)
	iState% := stateTo%;
	if tStart > 0 then tStateStart := tStart; endif;
end;


' Reward will deliver a reward only if the var rivUseSingleReward% (set in main dialog) is 0.
' RewardBypass will deliver a reward only if rivUseSingleReward is 1. 
' With new ability for multiple juicers, there is no ability to specify the number of rewards
'    because it would be a pain in the butt to code and would take up a lot of space on the
'    dialog boxes.  Instead I have arbitrarily decided that for each 200 ms of reward, the
'    "untimed" juicer will deliver one hit.  That value can be changed right here.
var MSPerRewardHit% := 200;


proc Reward(rewardMS%, t)
    var NumRewards;
    var NumRewards%;
    if rivUseSingleReward% = 0 then
        if t>0 then
            rivTLastReward := t;
        endif
        'Check juicer type and deliver reward
        if JuicerType% = 1 then  'open-high juicer, dispense based on ms
            DeliverRewardMS(rewardMS%);
        else
            if JuicerType% = 2 then  'open-low juicer, dispense based on number of hits
                NumRewards := round(rewardMS%/MSPerRewardHit%);
                NumRewards% := NumRewards;
                DeliverRewardNum%(NumRewards%);
            endif;
        endif;
    endif
    return;
end

proc RewardBypass(rewardMS%, t, prob)
    var NumRewards;
    var NumRewards%;
    if rivUseSingleReward% = 1 then
        if t>0 then
            rivTLastReward := t;
        endif
        ' roll the dice. prob is the probability that we give a reward here. If prob is 90, then
        ' we deliver reward 90% of the time. 
        if prob = 100 or (prob < 100 and Rand(100, 0) < prob) then
            'Check juicer type and deliver reward
            if JuicerType% = 1 then  'open-high juicer, dispense based on ms
                DeliverRewardMS(rewardMS%);
            else
                if JuicerType% = 2 then  'open-low juicer, dispense based on number of hits
                    NumRewards := round(rewardMS%/MSPerRewardHit%);
                    NumRewards% := NumRewards;
                    DeliverRewardNum%(NumRewards%);
                endif;
            endif;
        else
            LogInfo("Doh! No reward this time, even though it was earned.");
        endif
    endif
    return;
end

func Juice%()
    var NumRewards;
    var NumRewards%;
    'Check juicer type and deliver reward
    if JuicerType% = 1 then  'open-high juicer, dispense based on ms
        DeliverRewardMS(rivSingleRewardMS%);
    else
        if JuicerType% = 2 then  'open-low juicer, dispense based on number of hits
            NumRewards := round(rivSingleRewardMS%/MSPerRewardHit%);
            NumRewards% := NumRewards;
            DeliverRewardNum%(NumRewards%);
        endif;
    endif;
    return 1;
end


' Used to hard-quit from toolbar. This will close data files without saving!!! 
' It is important that this function be disabled once sampling is started!!!

func Quit%()
	if rivStimHandle% > 0 then
        ProgKill(rivStimHandle%);
        while ProgStatus(rivStimHandle%) > 0 do
            Yield();
        wend
        rivStimHandle% := 0;
    endif
	FileClose(-1,-1);
	return 0;
end;

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Stop%()

	' Disable idle process func
	ToolbarSet(0, "");

	' Tell stim app to shut down
	SafeSampleKey("q");
	Yield(.1);
	SampleStop();

	if rivStimHandle% > 0 then
        ProgKill(rivStimHandle%);
        while ProgStatus(rivStimHandle%) > 0 do
            Yield();
        wend
        rivStimHandle% := 0;
    endif
    return 0;

end;


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Start%()
    var cmdLine$;
    var offsetFilename$ := "unknown";
    var key$;
    var h, contrast%, sf, tf, ori, phase, cv$, pattern$, aperture$, ctf, iw, ih;
    var stmp$;
    var xhair$;
    
    ' Fetch the offset filename
    key$ := GetRegistryKey$(1) + "\\Rivalry";
    offsetFilename$ := GetStringRegistryValue$(GetRegistryKey$(1), "OffsetFile", "file_not_found");

    
    ' Parse the grating coordinates for display in the xy window
    ParseGratingParameters%(rivLeftGrating$, rivLeftGratingX, rivLeftGratingY, rivLeftGratingD, h, iw, ih, contrast%, sf, tf, ori, phase, cv$, pattern$, aperture$, ctf);
    ParseGratingParameters%(rivRightGrating$, rivRightGratingX, rivRightGratingY, rivRightGratingD, h, iw, ih, contrast%, sf, tf, ori, phase, cv$, pattern$, aperture$, ctf);
    GetFixationPointParameterValues(rivFixationX, rivFixationY, rivFixationD, rivFixationWindowD);
    
    ' Start sampling
   	SampleStart(0);
    ' Set Sequencer Variable #3 based on juicer type 
    SetJuicerSequencerVariable%();
    ' Clear any trigger bits on digout lines.
    SafeSampleKey("0");

    ' Generate command line
    cmdLine$ := "cmd /k " + GetBinDir$(1) + "rivalry -S -d " + GetDistanceToScreenMM$() + " -b gray -p 2 -r " + offsetFilename$ + " -s " + rivLeftGrating$ + " -s " + rivRightGrating$;
    if rivUseFixation% then
        cmdLine$ += " " + rivFixationArg$;
    endif
    if rivUseXhairs% = 1 then
        xhair$ := "-X " + str$(rivLeftGratingX) + "," + str$(rivLeftGratingY) + 
        "," + str$(rivLeftGratingD/2+rivXhairInnerRadiusOffset) + 
        "," + str$(rivLeftGratingD/2+rivXhairMiddleRadiusOffset) + 
        "," + str$(rivLeftGratingD/2+rivXhairOuterRadiusOffset) + 
        "," + str$(rivXhairNumGridDivisions%);
        
        if rivXhairInnerOffset > 0 and rivXhairOuterOffset > 0 then
            xhair$ += "," + str$(rivLeftGratingD/2+rivXhairInnerOffset) + "," + str$(rivLeftGratingD/2+rivXhairOuterOffset);
        endif
        
        cmdLine$ += " " + xhair$;
    endif
    
    
	'Begin the stimulus program. It will take a few seconds for the VSG to initialize.
	LogInfo(cmdLine$+"\n");
	rivStimHandle% := ProgRun(cmdLine$, 1);
	if rivStimHandle% < 0 then Message("Could not start stimulus."); halt; endif
	
	ToolbarSet(0,"",IdleProcessing%);	'Enable the IdleProcessing function
	ToolbarEnable(1,0);
	ToolbarEnable(2,1);
	ToolbarEnable(4,1);
	View(rivWindowData%);
    
    ' Text mark channel header. Version number refers to the content (this should be coordinated with the extraction).
    SampleText("RivalryDualVSG,2");
    SampleText(rivCVSID$);
    SampleText(cmdLine$);
    stmp$ := Print$("%f,%f,%d,%d,%f,%f,%f,%f,%d,%d", DegreesPerVoltX, DegreesPerVoltY, rivChanEyeX%, rivChanEyeY%, jsC2L, jsL2C, jsR2C, jsC2R, rivChanJoy%, rivUseSingleReward%);
    SampleText(stmp$);
    
    return 1;
end;

func Pause%()
    LogInfo("Pause requested.");
    rivIsPaused% := 1;
    return 1;
end

func Resume%()
    LogInfo("Resume requested.");
    rivIsPaused% := 0;
    return 1;
end

' UpdateSwapValues(iUpdateCorrectResponse)
'
' Compute the (random) time before another stim swap. If 'UpdateCorrectResponse
' is nonzero, also resets the correct js position. 

proc UpdateSwapValues(iJS%)
    
    rivSwapTime := Rand(rivSwapMaxTime - rivSwapMinTime, rivSwapMinTime);
    
    if iJS% <> 0 then
        docase
        case rivCorrectResponse% = JSLeft% then
            rivCorrectResponse% := JSRight%;
        case rivCorrectResponse% = JSRight% then
            rivCorrectResponse% := JSLeft%;
        else
            LogError("UpdateSwapValues", "ERROR! Unknown value for rivCorrectResponse (" + str$(rivCorrectResponse%) + ")");
            rivCorrectResponse% := JSUndefined%;
        endcase
    endif
    
    return;
end



' PrepareTrial
'
' Prepares variables etc used for driving a single trial

func PrepareTrial%()
    var index%;
    var s%;
    docase
    case rivCorrectionTrials% = 1 and doCorrectionTrial% = 1 then
        
        docase
        case rivCorrectResponse% = JSLeft% then
            LogInfo("Correction trial... LEFT");
            rivTrialTextMark$ := "*";
            s% := 1;
        case rivCorrectResponse% = JSRight% then
            LogInfo("Correction trial... RIGHT");
            rivTrialTextMark$ := "*";
            s% := 1;
        else
            LogError("", "Unknown correct response value!!!\n");
            s% := 0;
        endcase
        
    case rivChooseTrialTypes% <> 0 then
        
        ' This case is for testing only. The var rivChooseTrialTypes must be set to 1 manually. When it is, you get a dialog
        ' to choose the trial type each time through. 
        
        DlgCreate("Choose trial type");
        DlgList(1, "Trial type:", "TrainingL|TrainingR|RivalryLR|RivalryRL|RivCatchLR|RivCatchRL|TrainingLRT|TrainingRLT|TrainingLFixed|TrainingRFixed");
        if DlgShow(rivTrialTypeIndex%) = 1 then
            rivTrialType% := rivTrialTypes%[rivTrialTypeIndex%];
            PrepareTrialVars(rivTrialType%);
            s% := 1;
        else
            s% := 0;
        endif
        
    else
        
        s% := trialgenGetTrialIndex%(rivTrialTypeIndex%);
        
        if s% = 1 then
            rivTrialType% := rivTrialTypes%[rivTrialTypeIndex%];
            PrepareTrialVars(rivTrialType%);
        endif
        
    endcase
    
    ' reset complete trial flag and single reward goodness flag
    rivCompleteTrialFlag% := 0;
    rivSingleRewardGoodTrialFlag% := 1;
    
    ' Put text marker in data file to show what type of trial this is, along with other info describing what is about to happen. 
    if s% = 1 then
        SampleText(rivTrialTextMark$);
    endif
    
    return s%;
end

proc PrepareTrialVars(type%)
    rivTStartStim := -1;        ' used in WaitForStimOff to decide if a trial was good, depends on elapsed stim time. 
    rivTStimSwap := -1;
    docase
    case type% = trialtypeTrainingL% then
        LogInfo("Preparing trial... LEFT");
        rivCorrectResponse% := JSLeft%;
        rivIncorrectResponse% := JSRight%;
        rivStimKey$[0] := "5";
        rivStimKey$[1] := "A";
        rivStimKeyIndex% := 0;
        rivNStimKey% := 2;
        rivTrialTextMark$ := Print$("%d,%d,%c,%c", type%, rivNStimKey%, rivStimKey$[0], rivStimKey$[1]);
    case type% = trialtypeTrainingR% then
        LogInfo("Preparing trial... RIGHT");
        rivCorrectResponse% := JSRight%;
        rivIncorrectResponse% := JSLeft%;
        rivStimKey$[0] := "A";
        rivStimKey$[1] := "5";
        rivStimKeyIndex% := 0;
        rivNStimKey% := 2;
        rivTrialTextMark$ := Print$("%d,%d,%c,%c", type%, rivNStimKey%, rivStimKey$[0], rivStimKey$[1]);
    case type% = trialtypeRivalryLR% then
        LogInfo("Preparing trial... RivalryLR");
        rivCorrectResponse% := JSUndefined%;
        rivIncorrectResponse% := JSUndefined%;
        rivStimKey$[0] := "6";
        rivStimKeyIndex% := 0;
        rivNStimKey% := 1;
        rivTrialTextMark$ := Print$("%d,%d,%c,%c", type%, rivNStimKey%, rivStimKey$[0], rivStimKey$[1]);
    case type% = trialtypeRivalryRL% then
        LogInfo("Preparing trial... RivalryRL");
        rivCorrectResponse% := JSUndefined%;
        rivIncorrectResponse% := JSUndefined%;
        rivStimKey$[0] := "9";
        rivStimKeyIndex% := 0;
        rivNStimKey% := 1;
        rivTrialTextMark$ := Print$("%d,%d,%c,%c", type%, rivNStimKey%, rivStimKey$[0], rivStimKey$[1]);
    case type% = trialtypeRivalryCatchLR% then
        LogInfo("Preparing trial... RivalryCatchLR");
        rivCorrectResponse% := JSUndefined%;
        rivIncorrectResponse% := JSUndefined%;
        rivStimKey$[0] := "6";
        rivStimKeyIndex% := 0;
        rivNStimKey% := 1;
        rivRivalryCatchSwitchTime := Rand(rivRivalryCatchMaxSwitchTime - rivRivalryCatchMinSwitchTime, rivRivalryCatchMinSwitchTime);
        rivTrialTextMark$ := Print$("%d,%d,%c,%c,%f", type%, rivNStimKey%, rivStimKey$[0], rivStimKey$[1], rivRivalryCatchSwitchTime);
    case type% = trialtypeRivalryCatchRL% then
        LogInfo("Preparing trial... RivalryCatchRL");
        rivCorrectResponse% := JSUndefined%;
        rivIncorrectResponse% := JSUndefined%;
        rivStimKey$[0] := "9";
        rivStimKeyIndex% := 0;
        rivNStimKey% := 1;
        rivRivalryCatchSwitchTime := Rand(rivRivalryCatchMaxSwitchTime - rivRivalryCatchMinSwitchTime, rivRivalryCatchMinSwitchTime);
        rivTrialTextMark$ := Print$("%d,%d,%c,%c,%f", type%, rivNStimKey%, rivStimKey$[0], rivStimKey$[1], rivRivalryCatchSwitchTime);
    case type% = trialtypeTrainingLRT% then
        LogInfo("Preparing trial... Training LEFT->Rivalry->Training");
        rivCorrectResponse% := JSLeft%;
        rivIncorrectResponse% := JSRight%;
        rivStimKey$[0] := "5";
        rivStimKey$[1] := "A";
        ' 11/24/2010 djs
        ' Fix bug in call to Rand() here. Was calling this with a single arg. That call just seeds the
        ' random number generator and always returns something less than one (1). Fixed this so 
        ' the call uses an offset of 0; that triggers the correct behavior. 
        if Rand(2, 0)>1 then
            rivStimKey$[2] := "6";
        else
            rivStimKey$[2] := "9";
        endif
        rivStimKeyIndex% := 0;
        rivNStimKey% := 3;
        rivTRTTime1 := Rand(rivTRTTime1Max-rivTRTTime1Min, rivTRTTime1Min);
        rivTRTTime2 := Rand(rivTRTTime2Max-rivTRTTime2Min, rivTRTTime2Min);
        rivTRTTime3 := rivMaxStimTime - rivTRTTime1 - rivTRTTime2;
        rivTrialTextMark$ := Print$("%d,%d,%c,%c,%c,%f,%f,%f", type%, rivNStimKey%, rivStimKey$[0], rivStimKey$[1], rivStimKey$[2], rivTRTTime1, rivTRTTime2, rivTRTTime3);        
        rivTRTState% := rivTRTStateTraining1%;
    case type% = trialtypeTrainingRRT% then
        LogInfo("Preparing trial... Training RIGHT->Rivalry->Training");
        rivCorrectResponse% := JSRight%;
        rivIncorrectResponse% := JSLeft%;
        rivStimKey$[0] := "A";
        rivStimKey$[1] := "5";
        ' 11/24/2010 djs
        ' Fix bug in call to Rand() here. Was calling this with a single arg. That call just seeds the
        ' random number generator and always returns something less than one (1). Fixed this so 
        ' the call uses an offset of 0; that triggers the correct behavior. 
        if Rand(2, 0)>1 then
            rivStimKey$[2] := "6";
        else
            rivStimKey$[2] := "9";
        endif
        rivStimKeyIndex% := 0;
        rivNStimKey% := 3;
        rivTRTTime1 := Rand(rivTRTTime1Max-rivTRTTime1Min, rivTRTTime1Min);
        rivTRTTime2 := Rand(rivTRTTime2Max-rivTRTTime2Min, rivTRTTime2Min);
        rivTRTTime3 := rivMaxStimTime - rivTRTTime1 - rivTRTTime2;
        rivTrialTextMark$ := Print$("%d,%d,%c,%c,%c,%f,%f,%f", type%, rivNStimKey%, rivStimKey$[0], rivStimKey$[1], rivStimKey$[2], rivTRTTime1, rivTRTTime2, rivTRTTime3);        
        rivTRTState% := rivTRTStateTraining1%;
    case type% = trialtypeTrainingLFixed% then
        LogInfo("Preparing trial... Training LEFT->Fixed");
        rivCorrectResponse% := JSLeft%;
        rivIncorrectResponse% := JSRight%;
        rivStimKey$[0] := "5";
        rivStimKey$[1] := "A";
        rivStimKeyIndex% := 0;
        rivNStimKey% := 2;
        rivTFixedTime := Rand(rivTFixedMaxTime-rivTFixedMinTime, rivTFixedMinTime);
        rivTrialTextMark$ := Print$("%d,%d,%c,%c,%f", type%, rivNStimKey%, rivStimKey$[0], rivStimKey$[1],rivTFixedTime);        
    case type% = trialtypeTrainingRFixed% then
        LogInfo("Preparing trial... Training RIGHT->Fixed");
        rivCorrectResponse% := JSRight%;
        rivIncorrectResponse% := JSLeft%;
        rivStimKey$[0] := "A";
        rivStimKey$[1] := "5";
        rivStimKeyIndex% := 0;
        rivNStimKey% := 2;
        rivTFixedTime := Rand(rivTFixedMaxTime-rivTFixedMinTime, rivTFixedMinTime);
        rivTrialTextMark$ := Print$("%d,%d,%c,%c,%f", type%, rivNStimKey%, rivStimKey$[0], rivStimKey$[1],rivTFixedTime);        
    else
        LogError("", "Unknown index returned from trialgenGetTrialIndex%.\n");
    endcase

end



func RivalryDialog%()
    var i%;
    var stmp$;
    GetRivalryParameters();
    DlgCreate("Rivalry Parameters");
    DlgAllow(0xffff, 0, RivalryDialogChanged%);
    DlgGroup("Block structure", 1, 1, 50, 7);
    DlgInteger(1, "# of blocks", 1, 100, 25, 2);
    DlgInteger(2, "# Training trials/block", 0, 500, 25, 3, 2);
    DlgInteger(3, "# Rivalry trials/block", 0, 500, 25, 4, 2);
    DlgInteger(4, "# RivalryCatch trials/block", 0, 500, 25, 5, 2);
    DlgInteger(5, "# Training/Riv/Training trials/block", 0, 500, 25, 6, 2);
    DlgInteger(6, "# Training/Fixed trials/block", 0, 500, 25, 7, 2);
    
    DlgCheck(7, "Use beep?", 1, 8);
    DlgInteger(8, "Beep length (ms)", 1, 1000, 25, 9);
    DlgCheck(9, "Correction trials?", 1, 10);
    DlgCheck(10, "Use single reward?", 1, 11);
    DlgInteger(11, "Single reward size (ms)", 0, 1000, 25, 12);
    DlgInteger(12, "TRT reward probability (0-100)", 0, 100, 25, 13);
    DlgButton(101, "Fixation Settings", RivalryFixationDialog%, 1, 14);
    if rivUseFixation% = 1 then
        rivFixationTextItem% := DlgText(rivFixationArg$, 20, 14);
    else
        rivFixationTextItem% := DlgText("Fixation disabled", 20, 14);
    endif
    DlgButton(102, "Timing", RivalryTimingDialog%, 1, 15);
    DlgButton(103, "Reward/Swap/Catch", RivalryRewardSwapDialog%, 1, 16);
    DlgButton(104, "Electrodes", RivalryElectrodeDialog%, 1, 17);
    rivElectrodeTextItem% := DlgText(GetElectrodeTextItem$(), 15, 17, 15);
    DlgButton(105, "Crosshairs/Grid", RivalryXhairDialog%, 1, 18);
    DlgGroup("Gratings", 1, 19, 50, 3);
    DlgButton(106, "Left Grating", RivalryLGratingDialog%, 1, 20);
    rivLeftGratingTextItem% := DlgText(rivLeftGrating$, 15, 20);
    DlgButton(107, "Right Grating", RivalryRGratingDialog%, 1, 21);
    rivRightGratingTextItem% := DlgText(rivRightGrating$, 15, 21);
    i% := DlgShow(rivNBlocks%, rivNTrainingPerBlock%, rivNRivalryperBlock%, rivNRivalryCatchPerBlock%,
                  rivNTrainingRTPerBlock%, rivNTrainingFixedPerBlock%,
                  rivUseBeep%, rivBeepLengthMS%, rivCorrectionTrials%,
                  rivUseSingleReward%, rivSingleRewardMS%, rivSingleRewardProb%);
    if i% = 1 then
        SaveRivalryParameters();
    endif
    return i%;
end

func RivalryDialogChanged%(item%)
    var status% := 1;
    docase
    case item% = 0 then
        DlgEnable(rivUseFixation%, 101);
        DlgEnable(rivUseBeep%, 8);
        DlgEnable(rivUseSingleReward%, 11);
    case item% = 7 then
        DlgEnable(DlgValue(7), 8);
    case item% = 10 then
        DlgEnable(DlgValue(10), 11);
    case item% = 3 then
        DlgEnable(DlgValue(3), 101);
    endcase
    return status%;
end


proc GetRivalryParameters()
    var key$;
    var stmp$;
    key$ := GetRegistryKey$(1) + "\\Rivalry";
    rivLeftGrating$ := GetStringRegistryValue$(key$, "LeftGrating", rivLeftGrating$);
    rivRightGrating$ := GetStringRegistryValue$(key$, "RightGrating", rivRightGrating$);
    rivFixationArg$ := GetFixationArg$();   ' Note: this is NOT saved in SaveRivarlyParameters!
    rivNBlocks% := GetIntRegistryValue%(key$, "NBlocks", rivNBlocks%);
    rivNTrainingPerBlock% := GetIntRegistryValue%(key$, "NTrainingPerBlock", rivNTrainingPerBlock%);
    rivNRivalryPerBlock% := GetIntRegistryValue%(key$, "NRivalryPerBlock", rivNRivalryPerBlock%);
    rivNRivalryCatchPerBlock% := GetIntRegistryValue%(key$, "NRivalryCatchPerBlock", rivNRivalryCatchPerBlock%);
    rivUseBeep% := GetIntRegistryValue%(key$, "UseBeep", rivUseBeep%);
    rivCorrectionTrials% := GetIntRegistryValue%(key$, "CorrectionTrials", rivCorrectionTrials%);
    rivBeepLengthMS% := GetIntRegistryValue%(key$, "BeepLengthMS", rivBeepLengthMS%);
    rivUseSingleReward% := GetIntRegistryValue%(key$, "UseSingleReward", rivUseSingleReward%);
    rivSingleRewardMS% := GetIntRegistryValue%(key$, "SingleRewardMS", rivSingleRewardMS%);
    rivSingleRewardProb% := GetIntRegistryValue%(key$, "SingleRewardProb", rivSingleRewardProb%);
    rivResponseCorrectRewardSizeMS% := GetIntRegistryValue%(key$, "ResponseCorrectRewardSizeMS", rivResponseCorrectRewardSizeMS%);
    rivMaintainResponseRewardSizeMS% := GetIntRegistryValue%(key$, "MaintainResponseRewardSizeMS", rivMaintainResponseRewardSizeMS%);
    rivMaintainResponseRewardWait := GetFloatRegistryValue(key$, "MaintainResponseRewardWait", rivMaintainResponseRewardWait);
    rivSwapRewardSizeMS% := GetIntRegistryValue%(key$, "SwapRewardSizeMS", rivSwapRewardSizeMS%);
    rivSwapMinTime := GetFloatRegistryValue(key$, "SwapMinTime", rivSwapMinTime);
    rivSwapMaxTime := GetFloatRegistryValue(key$, "SwapMaxTime", rivSwapMaxTime);
    rivMaxStimTime := GetFloatRegistryValue(key$, "MaxStimTime", rivMaxStimTime);
    rivMinGoodTrialTime := GetFloatRegistryValue(key$, "MinGoodTrialTime", rivMinGoodTrialTime);
    rivMaxWaitForReadyTime := GetFloatRegistryValue(key$, "MaxWaitForReadyTime", rivMaxWaitForReadyTime);
    rivReadyFailWaitTime := GetFloatRegistryValue(key$, "ReadyFailWaitTime", rivReadyFailWaitTime);
    rivSwapMaxResponseTime := GetFloatRegistryValue(key$, "SwapMaxResponseTime", rivSwapMaxResponseTime);
    rivMaxResponseTime := GetFloatRegistryValue(key$, "MaxResponseTime", rivMaxResponseTime);
    rivResponseFailWaitTime := GetFloatRegistryValue(key$, "ResponseFailWaitTime", rivResponseFailWaitTime);
    rivResponseIncorrectWaitTime := GetFloatRegistryValue(key$, "ResponseIncorrectWaitTime", rivResponseIncorrectWaitTime);
    rivResponseBrokenWaitTime := GetFloatRegistryValue(key$, "ResponseBrokenWaitTime", rivResponseBrokenWaitTime);
    rivMaxStimWaitTime := GetFloatRegistryValue(key$, "MaxStimWaitTime", rivMaxStimWaitTime);
    rivReadyHoldRewardSizeMS% := GetIntRegistryValue%(key$, "ReadyHoldRewardSizeMS", rivReadyHoldRewardSizeMS%);
    rivReadyHoldTime := GetFloatRegistryValue(key$, "ReadyHoldTime", rivReadyHoldTime);
    rivUseFixation% := GetIntRegistryValue%(key$, "UseFixation", rivUseFixation%);
    rivMaxAcquisitionTime := GetFloatRegistryValue(key$, "MaxAcquisitionTime", rivMaxAcquisitionTime);
    rivAcquisitionFailWaitTime := GetFloatRegistryValue(key$, "AcquisitionFailWaitTime", rivAcquisitionFailWaitTime);
    rivFixationHoldTime := GetFloatRegistryValue(key$, "FixationHoldTime", rivFixationHoldTime);
    rivFixationFailWaitTime := GetFloatRegistryValue(key$, "FixationFailWaitTime", rivFixationFailWaitTime);
    rivRivalryCatchMinSwitchTime := GetFloatRegistryValue(key$, "RivalryCatchMinSwitchTime", rivRivalryCatchMinSwitchTime);
    rivRivalryCatchMaxSwitchTime := GetFloatRegistryValue(key$, "RivalryCatchMaxSwitchTime", rivRivalryCatchMaxSwitchTime);
    rivRivalryRewardHoldoff := GetFloatRegistryValue(key$, "RivalryRewardHoldoff", rivRivalryRewardHoldoff);
    rivElectrodes%[0] := GetIntRegistryValue%(key$, "ElectrodePort0", rivElectrodes%[0]);
    rivElectrodes%[1] := GetIntRegistryValue%(key$, "ElectrodePort1", rivElectrodes%[1]);
    rivElectrodes%[2] := GetIntRegistryValue%(key$, "ElectrodePort2", rivElectrodes%[2]);
    rivElectrodes%[3] := GetIntRegistryValue%(key$, "ElectrodePort3", rivElectrodes%[3]);
    rivElectrodes%[4] := GetIntRegistryValue%(key$, "ElectrodePort4", rivElectrodes%[4]);
    rivElectrodes%[5] := GetIntRegistryValue%(key$, "ElectrodePort5", rivElectrodes%[5]);
    rivElectrodes%[6] := GetIntRegistryValue%(key$, "ElectrodePort6", rivElectrodes%[6]);
    rivElectrodes%[7] := GetIntRegistryValue%(key$, "ElectrodePort7", rivElectrodes%[7]);
    rivTRTTime1Min := GetFloatRegistryValue(key$, "TRTTime1Min", rivTRTTime1Min);
    rivTRTTime1Max := GetFloatRegistryValue(key$, "TRTTime1Max", rivTRTTime1Max);
    rivTRTTime2Min := GetFloatRegistryValue(key$, "TRTTime2Min", rivTRTTime2Min);
    rivTRTTime2Max := GetFloatRegistryValue(key$, "TRTTime2Max", rivTRTTime2Max);
    rivTFixedMinTime := GetFloatRegistryValue(key$, "TFixedMinTime", rivTFixedMinTime);
    rivTFixedMaxTime := GetFloatRegistryValue(key$, "TFixedMaxTime", rivTFixedMaxTime);    
    rivNTrainingRTPerBlock% := GetIntRegistryValue%(key$, "NTrainingRTPerBlock", rivNTrainingRTPerBlock%);
    rivNTrainingFixedPerBlock% := GetIntRegistryValue%(key$, "NTrainingFixedPerBlock", rivNTrainingFixedPerBlock%);
    rivUseXhairs%  := GetIntRegistryValue%(key$, "UseXhairs", rivUseXhairs%);
    rivXhairInnerRadiusOffset := GetFloatRegistryValue(key$, "XhairInnerRadiusOffset", rivXhairInnerRadiusOffset);
    rivXhairMiddleRadiusOffset := GetFloatRegistryValue(key$, "XhairMiddleRadiusOffset", rivXhairMiddleRadiusOffset);
    rivXhairOuterRadiusOffset := GetFloatRegistryValue(key$, "XhairOuterRadiusOffset", rivXhairOuterRadiusOffset);
    rivXhairNumGridDivisions% := GetIntRegistryValue%(key$, "XhairNumGridDivisions", rivXhairNumGridDivisions%);
    rivXhairInnerOffset := GetFloatRegistryValue(key$, "XhairInnerOffset", rivXhairInnerOffset);
    rivXhairOuterOffset := GetFloatRegistryValue(key$, "XhairOuterOffset", rivXhairOuterOffset);
end



proc SaveRivalryParameters()
    var key$;
    var stmp$;
    key$ := GetRegistryKey$(1) + "\\Rivalry";
    SetStringRegistryValue(key$, "LeftGrating", rivLeftGrating$);
    SetStringRegistryValue(key$, "RightGrating", rivRightGrating$);
    SetIntRegistryValue(key$, "NBlocks", rivNBlocks%);
    SetIntRegistryValue(key$, "NTrainingPerBlock", rivNTrainingPerBlock%);
    SetIntRegistryValue(key$, "NRivalryPerBlock", rivNRivalryPerBlock%);
    SetIntRegistryValue(key$, "NRivalryCatchPerBlock", rivNRivalryCatchPerBlock%);
    SetIntRegistryValue(key$, "UseBeep", rivUseBeep%);
    SetIntRegistryValue(key$, "CorrectionTrials", rivCorrectionTrials%);
    SetIntRegistryValue(key$, "BeepLengthMS", rivBeepLengthMS%);
    SetIntRegistryValue(key$, "UseSingleReward", rivUseSingleReward%);
    SetIntRegistryValue(key$, "SingleRewardMS", rivSingleRewardMS%);
    SetIntRegistryValue(key$, "SingleRewardProb", rivSingleRewardProb%);
    SetIntRegistryValue(key$, "ResponseCorrectRewardSizeMS", rivResponseCorrectRewardSizeMS%);
    SetIntRegistryValue(key$, "MaintainResponseRewardSizeMS", rivMaintainResponseRewardSizeMS%);
    SetFloatRegistryValue(key$, "MaintainResponseRewardWait", rivMaintainResponseRewardWait);
    SetIntRegistryValue(key$, "SwapRewardSizeMS", rivSwapRewardSizeMS%);
    SetFloatRegistryValue(key$, "SwapMinTime", rivSwapMinTime);
    SetFloatRegistryValue(key$, "SwapMaxTime", rivSwapMaxTime);
    SetFloatRegistryValue(key$, "MaxStimTime", rivMaxStimTime);
    SetFloatRegistryValue(key$, "MinGoodTrialTime", rivMinGoodTrialTime);
    SetFloatRegistryValue(key$, "MaxWaitForReadyTime", rivMaxWaitForReadyTime);
    SetFloatRegistryValue(key$, "ReadyFailWaitTime", rivReadyFailWaitTime);
    SetFloatRegistryValue(key$, "MaxResponseTime", rivMaxResponseTime);
    SetFloatRegistryValue(key$, "SwapMaxResponseTime", rivSwapMaxResponseTime);
    SetFloatRegistryValue(key$, "ResponseFailWaitTime", rivResponseFailWaitTime);
    SetFloatRegistryValue(key$, "ResponseIncorrectWaitTime", rivResponseIncorrectWaitTime);
    SetFloatRegistryValue(key$, "ResponseBrokenWaitTime", rivResponseBrokenWaitTime);
    SetFloatRegistryValue(key$, "MaxStimWaitTime", rivMaxStimWaitTime);
    SetIntRegistryValue(key$, "ReadyHoldRewardSizeMS", rivReadyHoldRewardSizeMS%);
    SetFloatRegistryValue(key$, "ReadyHoldTime", rivReadyHoldTime);
    SetIntRegistryValue(key$, "UseFixation", rivUseFixation%);
    SetFloatRegistryValue(key$, "MaxAcquisitionTime", rivMaxAcquisitionTime);
    SetFloatRegistryValue(key$, "AcquisitionFailWaitTime", rivAcquisitionFailWaitTime);
    SetFloatRegistryValue(key$, "FixationHoldTime", rivFixationHoldTime);
    SetFloatRegistryValue(key$, "FixationFailWaitTime", rivFixationFailWaitTime);
    SetFloatRegistryValue(key$, "RivalryCatchMinSwitchTime", rivRivalryCatchMinSwitchTime);
    SetFloatRegistryValue(key$, "RivalryCatchMaxSwitchTime", rivRivalryCatchMaxSwitchTime);
    SetFloatRegistryValue(key$, "RivalryRewardHoldoff", rivRivalryRewardHoldoff);
    SetIntRegistryValue(key$, "ElectrodePort0", rivElectrodes%[0]);
    SetIntRegistryValue(key$, "ElectrodePort1", rivElectrodes%[1]);
    SetIntRegistryValue(key$, "ElectrodePort2", rivElectrodes%[2]);
    SetIntRegistryValue(key$, "ElectrodePort3", rivElectrodes%[3]);
    SetIntRegistryValue(key$, "ElectrodePort4", rivElectrodes%[4]);
    SetIntRegistryValue(key$, "ElectrodePort5", rivElectrodes%[5]);
    SetIntRegistryValue(key$, "ElectrodePort6", rivElectrodes%[6]);
    SetIntRegistryValue(key$, "ElectrodePort7", rivElectrodes%[7]);
    SetFloatRegistryValue(key$, "TRTTime1Min", rivTRTTime1Min);
    SetFloatRegistryValue(key$, "TRTTime1Max", rivTRTTime1Max);
    SetFloatRegistryValue(key$, "TRTTime2Min", rivTRTTime2Min);
    SetFloatRegistryValue(key$, "TRTTime2Max", rivTRTTime2Max);
    SetFloatRegistryValue(key$, "TFixedMinTime", rivTFixedMinTime);
    SetFloatRegistryValue(key$, "TFixedMaxTime", rivTFixedMaxTime);    
    SetIntRegistryValue(key$, "NTrainingRTPerBlock", rivNTrainingRTPerBlock%);
    SetIntRegistryValue(key$, "NTrainingFixedPerBlock", rivNTrainingFixedPerBlock%);
    SetIntRegistryValue(key$, "UseXhairs", rivUseXhairs%);
    SetFloatRegistryValue(key$, "XhairInnerRadiusOffset", rivXhairInnerRadiusOffset);
    SetFloatRegistryValue(key$, "XhairMiddleRadiusOffset", rivXhairMiddleRadiusOffset);
    SetFloatRegistryValue(key$, "XhairOuterRadiusOffset", rivXhairOuterRadiusOffset);
    SetIntRegistryValue(key$, "XhairNumGridDivisions", rivXhairNumGridDivisions%);
    SetFloatRegistryValue(key$, "XhairInnerOffset", rivXhairInnerOffset);
    SetFloatRegistryValue(key$, "XhairOuterOffset", rivXhairOuterOffset);
    
end

func RivalryFixationDialog%()
    var s%;
    DlgCreate("Rivarly Fixation parameters");
    DlgAllow(0xffff, 0, RivalryFixationDialogChanged%);
    DlgCheck(1, "Use Fixation?");
    DlgReal(2, "Max acq. time(s):", .01, 100);
    DlgReal(3, "Acq. FAIL wait time(s):", .01, 10);
    DlgReal(4, "Fixation hold time(s):", 0.01, 10);
    DlgReal(5, "Fix. BREAK wait time(s):", 0.01, 10);
    DlgCheck(6, "Always Looking (TESTING)");
    DlgCheck(7, "Choose trial types (TESTING)");
    DlgShow(rivUseFixation%, rivMaxAcquisitionTime, rivAcquisitionFailWaitTime, rivFixationHoldTime, rivFixationFailWaitTime, rivAlwaysLooking%, rivChooseTrialTypes%);
    if rivUseFixation% = 1 then
        DlgValue$(rivFixationTextItem%, rivFixationArg$);
    else
        DlgValue$(rivFixationTextItem%, "Fixation disabled");
    endif
    return 1;
end

func RivalryFixationDialogChanged%(item%)
    var status% := 1;
    docase
    case item% = 0 then
        DlgEnable(rivUseFixation%, 2);
        DlgEnable(rivUseFixation%, 3);
        DlgEnable(rivUseFixation%, 4);
        DlgEnable(rivUseFixation%, 5);
        DlgEnable(rivUseFixation%, 6);
    case item% = 1 then
        DlgEnable(DlgValue(1), 2);
        DlgEnable(DlgValue(1), 3);
        DlgEnable(DlgValue(1), 4);
        DlgEnable(DlgValue(1), 5);
        DlgEnable(DlgValue(1), 6);
    endcase
    return status%;
end

func RivalryTimingDialog%()
	DlgCreate("Rivalry timing", 25, 10);
	DlgReal(1, "Max rdy time(s):", .01, 10);
	DlgReal(2, "Rdy FAIL wait time(s):", .01, 10);
    DlgReal(3, "Max resp time(s):", .01, 10);
    DlgReal(4, "Swap resp time(s):", .01, 10);
    DlgReal(5, "Resp FAIL wait time(s):", .01, 10);
    DlgReal(6, "Resp INCORRECT wait time(s):", .01, 10);
    DlgReal(7, "Resp BROKEN wait time(s):", .01, 10);
    DlgReal(8, "Max stim wait time(s):", .01, 10);
	DlgShow(rivMaxWaitForReadyTime, rivReadyFailWaitTime, rivMaxResponseTime, rivSwapMaxResponseTime, rivResponseFailWaitTime, 
            rivResponseIncorrectWaitTime, rivResponseBrokenWaitTime, rivMaxStimWaitTime);
    return 1;
end


func RivalryRewardSwapDialog%()
    
    ' Set value of temp var so that the changed function RivalryRewardSwapDialogChanged can 
    ' decide whether to disable reward-related values. The value of rivUseSingleReward is not 
    ' updated until the main dialog is OK'd, but these vars should be enabled/disabled based
    ' on the current state of the checkbox. 
    rivTempUseSingleReward% := DlgValue(10);
	DlgCreate("Rivalry reward/swap");
    DlgReal(1, "Ready hold time (s)", .1, 10);
    DlgInteger(2, "Ready hold reward (ms)", 0, 1000);
    DlgInteger(3, "Reward (correct resp, ms)", 1, 1000);
    DlgInteger(4, "Reward (maintain, ms)", 1, 1000);
    DlgReal(5, "Reward wait (maintain)", 0.01, 10);
    DlgInteger(6, "Reward (swap, ms)", 0, 1000);
    DlgReal(7, "Swap time - min", 0.01, 60);
    DlgReal(8, "Swap time - max", 0.01, 60);
    DlgReal(9, "Max stim time (s)", .01, 60);
    DlgReal(10, "Min time for good trial", .01, 60);
    DlgReal(11, "Catch switch - min(s)", 0.01, 60.0);
    DlgReal(12, "Catch switch - max(s)", 0.01, 60.0);
    DlgReal(13, "Riv reward holdoff(s)", 0.01, 60.0);
    DlgReal(14, "TRT T1 Min", 0.01, 60.0);
    DlgReal(15, "TRT T1 Max", 0.01, 60.0);
    DlgReal(16, "TRT T2 Min", 0.01, 60.0);
    DlgReal(17, "TRT T2 Max", 0.01, 60.0);
    DlgReal(18, "TFixed Min", 0.01, 60.0);
    DlgReal(19, "TFixed Max", 0.01, 60.0);
    DlgAllow(0xffff, 0, RivalryRewardSwapDialogChanged%);
	DlgShow(rivReadyHoldTime, rivReadyHoldRewardSizeMS%, rivResponseCorrectRewardSizeMS%, rivMaintainResponseRewardSizeMS%, 
    rivMaintainResponseRewardWait, rivSwapRewardSizeMS%, rivSwapMinTime, rivSwapMaxTime, rivMaxStimTime, rivMinGoodTrialTime,
    rivRivalryCatchMinSwitchTime, rivRivalryCatchMaxSwitchTime, rivRivalryRewardHoldoff,
    rivTRTTime1Min, rivTRTTime1Max, rivTRTTime2Min, rivTRTTime2Max, rivTFixedMinTime, rivTFixedMaxTime);
    return 1;
end

func RivalryRewardSwapDialogChanged%(item%)
    var status% := 1;
    docase
    case item% = 0 then
        DlgEnable(1-rivTempUseSingleReward%, 2, 3, 4, 5, 6, 13);
    endcase
    return status%;
end


func RivalryElectrodeDialog%()
	DlgCreate("Rivalry Electrodes");
    DlgCheck(1, "Port 0");
    DlgCheck(2, "Port 1");
    DlgCheck(3, "Port 2");
    DlgCheck(4, "Port 3");
    DlgCheck(5, "Port 4");
    DlgCheck(6, "Port 5");
    DlgCheck(7, "Port 6");
    DlgCheck(8, "Port 7");
	DlgShow(rivElectrodes%[0], rivElectrodes%[1], rivElectrodes%[2], rivElectrodes%[3], rivElectrodes%[4], rivElectrodes%[5], rivElectrodes%[6], rivElectrodes%[7]); 
    DlgValue$(rivElectrodeTextItem%, GetElectrodeTextItem$());
    return 1;
end

func GetElectrodeTextItem$()
    var s$ := "";
    var n% := 0;
    var i%;
    for i% := 0 to 7 do
        if rivElectrodes%[i%] = 1 then
            if n%> 0 then
                s$ += ",";
            endif
            n% += 1;
            s$ += str$(i%);
        endif
    next
    if n% = 0 then
        s$ := "None";
    endif
    return s$;
end


func DoGratingDialog%(label$, &param$)
    var status%;
    var disable%[1];
    var ndisable% := 0;
    var x, y, w, h, sf, tf, orientation, phase, ctf, iw, ih;
    var contrast%;
    var cv$, pattern$, aperture$;
    
    status% := GratingParametersDialog%(label$, param$,
                                        disable%[], ndisable%, 
                                        x, y, w, h, iw, ih, contrast%, sf, tf, orientation, phase, cv$, pattern$, aperture$, ctf);                                       
    return status%;
end



func RivalryXhairDialog%()
    DlgCreate("Crosshair/Grid");
    DlgCheck(1, "Use crosshair grid");
    DlgReal(2, "Grid inner radius offset", 0, 100);
    DlgReal(3, "Grid mid radius offset", 0, 100);
    DlgReal(4, "Grid outer radius offset", 0, 100);
    DlgInteger(5, "Number of divisions in grid", 2, 128);
    DlgReal(6, "Xhair inner offset", -1, 100);
    DlgReal(7, "Xhair outer offset", -1, 100);
    DlgAllow(0xffff, 0, RivalryXhairDialogChanged%);
    DlgShow(rivUseXhairs%, rivXhairInnerRadiusOffset, rivXhairMiddleRadiusOffset, rivXhairOuterRadiusOffset, rivXhairNumGridDivisions%, rivXhairInnerOffset, rivXhairOuterOffset);;
    return 1;
end

func RivalryXhairDialogChanged%(item%)
    docase 
    case item% = 0 then
        DlgEnable(rivUseXhairs%, 2, 3, 4, 5, 6, 7);
    case item% = 1 then
        DlgEnable(DlgValue(1), 2, 3, 4, 5, 6, 7);
    endcase
    return 1;
end


func RivalryLGratingDialog%()
    var s%;
    s% := DoGratingDialog%("Left Grating Params", rivLeftGrating$);
    if s% = 1 then
        DlgValue$(rivLeftGratingTextItem%, rivLeftGrating$);
    endif
    return 1;
end


func RivalryRGratingDialog%()
    var s%;
    s% := DoGratingDialog%("Right Grating Params", rivRightGrating$);
    if s% = 1 then
        DlgValue$(rivRightGratingTextItem%, rivRightGrating$);
    endif
    return 1;
end

func Looking%(x, y)
	'Determine if the eye position is within the fixation window
    var s% := 0;
    docase
    case rivAlwaysLooking% = 1 then
        s% := 1;
    case (Pow(x-FixationX, 2) + Pow(y-FixationY, 2)) <= Pow(WindowRadius, 2) then 
        s% := 1; 
    else 
        s% := 0; 
    endcase
    return s%;
end;
