'SetPlexonRecording1824OnPower1401.s2s - a script designed to be automatically opened
'with a new instance of Spike2 for linked-1401 recording with the Plexon electrode
'
'This script will set up the sampling configuration on the Power1401 with 5 WaveMarks and
'24 LFP channels, then start sampling contingent on a trigger.  This script is not intended
'to do anything else.  Once recording is ready to go, the user will run the experiment from
'the Spike2 instance controlling the Micro1401 mark II - the trigger will start sampling on
'both 1401s simultaneously and there will be nothing left to do on this Spike2 instance except
'stop sampling once the whole thing is done.

#include "../util/UsreyUtil.s2s"  'this should include ElectrodeUtilities and everything else needed

var DataWindow%;
var key$;
'const SynchChannel% := 28;  '28 overwrites, whatevs, only for testing

SampleClear();

CreatePlexonSamplingConfiguration1824Power(); 'Note that for right now the ONLY Plexon configuration is 18 WaveMark/24 LFP (maximal WMs for 24 LFPs, trust me)

'For synchronization test, will overwrite one data channel
'SampleEvent(SynchChannel%,1,2,3600); 'Synch channel, level
'SampleComment$(SynchChannel%,"Synch");
'SampleTitle$(SynchChannel%,"Synch");

SampleOptimise(0,1,2,0,0,0,0);  'for the Power 1401: manually set sampling timing, group channels with same ideal rate, Power1401, unused, unused, do not disable for compatibility, no burst mode



key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Temp\\Filepref";
'printlog("Key is %s\n",key$);
    
FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 3);
FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 1);
'printlog("File will be %s\n",dataCellName$ + "_atn_power_" + Str$(GetIntRegistryValue%(key$, "fn", 0)));
'SampleAutoName$(dataCellName$ + "_atn_power_" + Str$(GetIntRegistryValue%(key$, "fn", 0)));
'SampleAutoName$(dataCellName$ + "_atnPOWER_000");  'NOTE: maximum of 13 characters!!!
SampleAutoName$(dataCellName$ + "_" + GetStringRegistryValue$(key$, "pref", "") + "POWER_000"); 'NOTE: maximum of 13 characters!!!
SampleAutoFile(1);  'Enable automatic file naming
SampleAutoComment(0); 'Prompt for comment after sampling
SampleAutoCommit(60); 'Seconds between each file commit
InitializeToolbar();  'puts the function into the toolbar


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' InitializeToolbar - prepare toolbar buttons. Note that the idle processing function (ToolbarSet(0, blah, blah)) is 
' not set here. That's done when the user hits the start button.
'
proc InitializeToolbar()
    
    'Open the data sampling window, normally this is done in its own function but as we're not really doing much else...
	DataWindow% := FileNew(0,4);
    printlog("datawindow is %d\n",dataWindow%);
	Window(0,48,100,95);
	View(DataWindow%).WindowVisible(1);
    
    'Get the name of the most recent .s2r resource file, if any, and determine whether we are to use it
    var key$;
    var fn$;
    'var useSpikeTemplate%;  'not used
	key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Scripts\\AttentionGNG";
	Profile(key$, "powerS2Rfile", "x", fn$);
    'Profile(key$, "useSpikeTemplate", 0, useSpikeTemplate%);  'not used
    
    'Apply the ,s2r resource file to the current data window, which will apply the spike shape templates
    'if useSpikeTemplate% = 1 and fn$ <> "x" then  'now, not putting in a checkbox, Henry sayd let it load every time
    if fn$ <> "x" then
        FileApplyResource(fn$);
    endif
    
    
	View(App(8)).WindowVisible(0);	'Hide the standard sample bar
	ToolbarVisible(1);
	'UpdateToolbarText();
	ToolbarSet(1,"Start FIRST",Start%);
	ToolbarSet(2,"Sample stop", Stop%);
	ToolbarSet(3,"Quit",Quit%);
    ToolbarEnable(2,0);
	Toolbar("Go",0x3ff);
    
end;

func Start%()

'    var key$;
'    key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Temp\\Filenumber";
'    
'    FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 3);
'    FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 1);
'    printlog("File will be %s\n",dataCellName$ + "_atn_power_" + Str$(GetIntRegistryValue%(key$, "fn", 0)));
'    SampleAutoName$(dataCellName$ + "_atn_power_" + Str$(GetIntRegistryValue%(key$, "fn", 0)));
'    SampleAutoFile(1);  'Enable automatic file naming
'    SampleAutoComment(0); 'Prompt for comment after sampling
'    SampleAutoCommit(60); 'Seconds between each file commit
    
        
    SampleStart(1);  'set sampling to start on a trigger
    
    
    ToolbarEnable(2,1);
	ToolbarEnable(1,0);
	ToolbarEnable(3,0);
	View(DataWindow%);
	Yield(.1);
    return 1;
    
    
end    
    

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Stop%()
    var i%, mylen%;
    var fn$;
    var chanToExport%[30];
    
	' Disable idle process func, don't think this is necessary because we won't have an idle function
	'ToolbarSet(0,"");
    SampleStop();
    
    View(DataWindow%);
    ExportChanList(); 
    'textmark and keyboard channels aren't important here
    'chanToExport%[1] := 30;  'channels to export go in elements 1:...'30 is the textmark channel
    'chanToExport%[2] := 31;  '31 is the keyboard channel
    
    'This file can only be running the 18/24 config, which is 5 WMs followed by 24 LFPs
    for i% := 0 to 4 do
        chanToExport%[i%+1] := i%+1;  'wavemark channels are in order
    next;
    for i% := 0 to 23 do
        chanToExport%[i%+6] := i%+6;  'LFP channels are in order
    next;
    chanToExport%[0] := 29;  'total number of channels goes in element 0
    ExportChanList(0,view(datawindow%).maxtime(),chanToExport%[]);
    
    'Code for putting other various channels into the Matlab extraction, Ben doesn't want them but they will be useful for other code    
    '    ExportChanList(0,maxtime(),XChannel%);  'Eye position channel, X
    '    ExportChanList(0,maxtime(),YChannel%);  'Eye position channel, Y
    'for i% := 0 to NumWavemarkPorts%-1 do
    '    ExportChanList(0,maxtime(),i%+1);  'Wavemark channel(s)
    'next;
    
    
    fn$ := FileName$();  'get current file name
    printlog("file name is %s\n",fn$);
    mylen% := Len(fn$);
    fn$ := Left$(fn$,mylen%-4);
    if Right$(fn$,1) = "." then  'if the file is an .smrx, we need to adjust further
        fn$ := Left$(fn$,Len(fn$)-1);
    endif;
    fn$ := fn$ + ".mat";
    FileSaveAs(fn$,100,0,"",0,"UseSName=0"); 'Do not overwrite the .mat file - should have a different name and if it doesn't that is a red flag    
    
    ' Save most recent .s2r file name to registry
    fn$ := Left$(fn$,mylen%-4);
    fn$ := fn$ + ".s2r";
    var key$;
	key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Scripts\\AttentionGNG";
	Profile(key$, "powerS2Rfile", fn$);
    
end;



' Used to hard-quit from toolbar. This will close data files without saving!!! 
' It is important that this function be disabled once sampling is started!!!

func Quit%()
	FileClose(-1,-1);
	return 0;
end;