
'StimFFT - a little script to collect one channel of data, control a stimulator, do FFT on the results
#include "../util/UsreyUtil.s2s"  'might need this


var iScript%;

var tNow;
var tStateStart;
var tPreOn;
var tPreOff;
var tPostOn;
var tPostOff;
var count%;

var nRepeats%;
var sfftPrePostDur;
var sfftStimulationDur;
var sfftRecoveryDur;
var sfftPulseDuration;
var sfftDoTrigger%;

var dataChannel% := 1;
var dataWindow%;
var sfftOnePrePeriodWindow%;
var sfftAllPrePeriodWindow%;
var sfftOnePostPeriodWindow%;
var sfftAllPostPeriodWindow%;

var iState%;
var stateStart% := 1;
var statePreStim% := 2;
var stateStim% := 3;
var statePostStim% := 4;
var stateWaitForPreStim% := 5;
var stateDone% := 6;

' run dialog
iScript% := StimDialog%();  'the dialog box will open an input file (inputFileHandle%)
if iScript% <> 1 then
	PrintLog("User cancel - exit gracefully\n");
	Halt;
endif;


'Create Sample Configuration
CreateSampleConfiguration();

' Get display windows ready
InitializeWindows();

' Prepare the toolbar buttons
InitializeToolbar();


func StimDialog%()
    var i%;
    var doTrigger$[2];
    doTrigger$[0] := "Give 5 ms trigger pulse";
    doTrigger$[1] := "Remain high thru stim period";
    
    GetStimDialogParameters();
    
	DlgCreate("StimFFT Parameters", 25, 10);
	DlgInteger(1, "Number of Repeats:", 1, 1000);
	DlgReal(2, "Pre/Post analysis period (s):", .01, 1000);
	DlgReal(3, "Stimulation dead period (s):", .01, 100);  'dead period is 10 ms, stimulator control pulse width is 5 ms, no real need to do SafeSampleKey
    DlgReal(4, "Recovery period (s):", .01, 1000); 
    DlgList(5, 30, doTrigger$[], 2);

    'DlgAllow(0, 0, StimDialogChanged%);
    
    i% := DlgShow(nRepeats%,sfftPrePostDur,sfftStimulationDur,sfftRecoveryDur,sfftDoTrigger%);
  
    SaveStimDialogParameters();
    
    if sfftDoTrigger% = 0 then
        sfftPulseDuration := 0.005;  '5 ms pulse
    else
        sfftPulseDuration := sfftStimulationDur;  'stay high throughout
    endif;
    

    return 1;
end


proc GetStimDialogParameters()
	var stmp$;
	var key$;
	key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Scripts\\StimFFT";
    
	nRepeats% := GetIntRegistryValue%(key$, "nRepeats", nRepeats%);
    sfftPrePostDur := GetFloatRegistryValue(key$, "PrePostDur", sfftPrePostDur);
    sfftStimulationDur := GetFloatRegistryValue(key$, "StimulationDur", sfftStimulationDur);
    sfftRecoveryDur := GetFloatRegistryValue(key$, "RecoveryDur", sfftRecoveryDur);
    sfftDoTrigger% := GetIntRegistryValue%(key$, "DoTrigger", sfftDoTrigger%);
end;

proc SaveStimDialogParameters()
	var key$;
	key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Scripts\\StimFFT";
    SetIntRegistryValue(key$, "nRepeats", nRepeats%);
    SetFloatRegistryValue(key$, "PrePostDur",  sfftPrePostDur);
    SetFloatRegistryValue(key$, "StimulationDur", sfftStimulationDur);
    SetfloatRegistryValue(key$, "RecoveryDur", sfftRecoveryDur);
    SetIntRegistryValue(key$, "DoTrigger", sfftDoTrigger%);
end;



''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc CreateSampleConfiguration()
	var index;
    var key$;
    key$:="AlertRig\\" + GetCurrentConfiguration$() + "\\Temp\\Filepref";
    SampleClear(); 'Set standard sampling state

    FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 3);
    FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 1);
    
    SampleAutoName$(dataCellName$ + "_sfft_000");  'NOTE: maximum of 13 characters!!!
    SampleAutoFile(1);  'Enable automatic file naming
    
	SampleAutoComment(0); 'Prompt for comment after sampling
	SampleAutoCommit(60); 'Seconds between each file commit
    
    SampleWaveform(DataChannel%, 7, 20000);
	SampleTitle$(DataChannel%, "Data");
    
	SampleTextMark(200);  'increase number of allowed characters, 1 is so stingy!
    
    SampleSequencer(script$ + "StimFFT.pls");

    SampleOptimise(2,2,2,2,50);  'otherwise: full optimize timing, channels may have different rates, Power1401 (lowest common denominator, so eh), low usPerTime of 2, high usPerTime of 50

	SampleMode(1); 'Continuous sampling
end;



proc InitializeWindows()

	'Open the data sampling window
	dataWindow% := FileNew(0,4);  'show spike shape setup dialog
    printlog("datawindow is %d\n",dataWindow%);
	Window(0,48,100,95);
	View(dataWindow%).WindowVisible(1);
    
    'set up windows to hold the various FFT analyses
    sfftOnePrePeriodWindow% := SetPower(DataChannel%,16384,0);  'Henry wants maximum FFT size, for now no window but if Henry wants Hanning or Hamming then update
    YAxisAttrib(-1,3);  'Apparently, this must be done here, and once for each channel.  Whatevs.
    sfftAllPrePeriodWindow% := SetPower(DataChannel%,16384,0);
    YAxisAttrib(-1,3);
    sfftOnePostPeriodWindow% := SetPower(DataChannel%,16384,0);
    YAxisAttrib(-1,3);
    sfftAllPostPeriodWindow% := SetPower(DataChannel%,16384,0);
    YAxisAttrib(-1,3);
    View(sfftOnePrePeriodWindow%).WindowTitle$("Most Recent Prestimulus Window");  'give all a title
    View(sfftAllPrePeriodWindow%).WindowTitle$("All Prestimulus Windows"); 
    View(sfftOnePostPeriodWindow%).WindowTitle$("Most Recent Poststimulus Window"); 
    View(sfftAllPostPeriodWindow%).WindowTitle$("All Poststimulus Windows"); 
    View(sfftOnePrePeriodWindow%).Window(0,0,25,48);  'arrange windows - this should hopefully be decent
    View(sfftAllPrePeriodWindow%).Window(50,0,75,48); 
    View(sfftOnePostPeriodWindow%).Window(25,0,50,48); 
    View(sfftAllPostPeriodWindow%).Window(75,0,100,48);
    View(sfftOnePrePeriodWindow%).WindowVisible(1);  'set all to visible
    View(sfftAllPrePeriodWindow%).WindowVisible(1); 
    View(sfftOnePostPeriodWindow%).WindowVisible(1); 
    View(sfftAllPostPeriodWindow%).WindowVisible(1);
    View(sfftOnePrePeriodWindow%).XRange(1,100);  'change axes to only show 1 to 100 Hz
    View(sfftAllPrePeriodWindow%).XRange(1,100); 
    View(sfftOnePostPeriodWindow%).XRange(1,100); 
    View(sfftAllPostPeriodWindow%).XRange(1,100);
    

    
end;


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' InitializeToolbar - prepare toolbar buttons. Note that the idle processing function (ToolbarSet(0, blah, blah)) is 
' not set here. That's done when the user hits the start button.
'
proc InitializeToolbar()
    
    
	View(App(8)).WindowVisible(0);	'Hide the standard sample bar
	ToolbarVisible(1);

    ToolbarSet(1,"Sample start",Start%);
	ToolbarSet(2,"Sample stop", Stop%);
	ToolbarSet(3,"Quit",Quit%);
	ToolbarEnable(1,1);
    ToolbarEnable(2,0);
    ToolbarEnable(3,1);
	Toolbar("Go",0x3ff);
    
end;


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Start%()
    
    var tempSeqVarValue;
    var tempSeqVarValue%;
    var SequencerPeriodMS;
    
    'start sampling
    SampleStart(0); 'Start sampling now
    
    SequencerPeriodMS := SampleSeqClock(1);  'Get the clock period of the sequencer, in MS, must do this after starting sampling
    
    
    iState% := stateStart%;  'set initial state for the idle loop    
    
	ToolbarSet(0,"",IdleProcessing%);	'Enable the IdleProcessing function
	ToolbarEnable(2,1);
	ToolbarEnable(1,0);
	'ToolbarEnable(3,0);  'allow stop function to run anytime?
    
    tempSeqVarValue := sfftPulseDuration*1000/SequencerPeriodMS;  'do math in float
    tempSeqVarValue% := tempSeqVarValue;  'now convert to integer
    SampleSeqVar(1,tempSeqVarValue%);  'set pre-pulse stimulus duration in clock ticks
    'printlog("Pulse Duration is %d\n",tempSeqVarValue%);
    
    
	View(DataWindow%);
	Yield(.1);
    return 1;
end;


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Stop%()
    var i%, mylen%;
    var fn$;
    var chanToExport%[30];
    
	' Disable idle process func
	ToolbarSet(0,"");  
    
	SampleStop();
    
    
    View(DataWindow%);
    ExportChanList(); 
    chanToExport%[1] := 30;  'channels to export go in elements 1:...'30 is the textmark channel
    chanToExport%[2] := DataChannel%;  'stim channel
    chanToExport%[0] := 2;  'export two channels
    
    ExportChanList(0,view(datawindow%).maxtime(),chanToExport%[]); 
    
    fn$ := FileName$();  'get current file name
    printlog("file name is %s\n",fn$);
    mylen% := Len(fn$);
    fn$ := Left$(fn$,mylen%-4);
    if Right$(fn$,1) = "." then  'if the file is an .smrx, we need to adjust further
        fn$ := Left$(fn$,Len(fn$)-1);
    endif;
    fn$ := fn$ + ".mat";
    FileSaveAs(fn$,100,0,"",0,"UseSName=0"); 'Do not overwrite the .mat file - should have a different name and if it doesn't that is a red flag    
    
    ' Write parameter file
	WriteParameterFile();
    
end;


' Used to hard-quit from toolbar. This will close data files without saving!!! 
' It is important that this function be disabled once sampling is started!!!

func Quit%()
	FileClose(-1,-1);
	return 0;
end;



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc WriteParameterFile()
	var parFileName$;
	var parFileBase$;
	var parHandle%;
    var tempPrimary$;
    var tempSecondary$;

	' get filename for parfile (data file + "par" extension) and open it
	View(DataWindow%);
	parFileBase$ := FileName$(1) + FileName$(2) + FileName$(3) + FileName$(4);
	parFileName$ := parFileBase$ + ".par";
	PrintLog("par filename is " + parFileName$ + "\n");
	parHandle% := FileOpen(parFileName$, 8, 1);

	' write general info - eye coil gains, dist to screen
	Print("Parameters for %s\n\n", parFileBase$);

	Print("General information\n");
	Print("-------------------\n\n");
	Print("Number of Repeats            : %d\n", nRepeats%);
	Print("Pre/Post Analysis Period (s) : %f\n", sfftPrePostDur);
	Print("Stimulation Duration     (s) : %f\n", sfftStimulationDur);
	Print("Recovery Duration        (s) : %f\n", sfftRecoveryDur);
    
    if sfftDoTrigger% = 0 then
        Print("Trigger mode, pulse is 5 ms in duration\n");
    else
        Print("Pulse Duration           (s) : %f\n", sfftStimulationDur);
    endif;
    
    
    
    Print("\n");

	' close parfile
	FileClose(0);

end;



func IdleProcessing%()
	var iStatus% := 1;	
    
    tNow := View(DataWindow%).MaxTime();

    docase 
    case iState% = stateStart% then
        
        'just let recording stabilize?
        if tNow > 3 then
            tPreOn := tNow;
            SampleText("Prestimulus Period Begins",tNow);
            ChangeStateTo(statePreStim%, tNow);
        endif;
        
    case iState% = statePreStim% then
        
        if tNow > tStateStart + sfftPrePostDur then
            tPreOff := tPreOn + sfftPrePostDur;
            SampleText("Stimulation Period Begins",tNow);
            SampleKey("S");  'actually start the stimulator, the digout pulse will turn off automatically in 5 ms
            ChangeStateTo(stateStim%, tNow);
        endif;
        
    case iState% = stateStim% then 
        
        if tNow > tStateStart + sfftStimulationDur then
            tPostOn := tNow;
            SampleText("Poststimulus Period Begins",tNow);
            ChangeStateTo(statePostStim%, tNow);
        endif;
        
    case iState% = statePostStim% then  
        
        if tNow > tStateStart + sfftPrePostDur then
            tPostOff := tPostOn + sfftPrePostDur;
            count% += 1;  'increment count of stim periods
            'do processing of FFT windows
            view(sfftOnePrePeriodWindow%).process(tPreOn,tPreOff,1,1);
            view(sfftAllPrePeriodWindow%).process(tPreOn,tPreOff,0,1);  'Same thing, just don't clear
            view(sfftOnePostPeriodWindow%).process(tPostOn,tPostOff,1,1);
            view(sfftAllPostPeriodWindow%).process(tPostOn,tPostOff,0,1);  'Same thing, just don't clear
            
            if count% < nRepeats% then
                SampleText("Recovery Period Begins",tNow);
                ChangeStateTo(stateWaitForPreStim%, tNow);
            else
                SampleText("Protocol Complete",tNow);
                ChangeStateTo(stateDone%, tNow);
            endif;
        endif;
        
    case iState% = stateWaitForPreStim% then
        
        if tNow > tStateStart + sfftRecoveryDur then
            SampleText("Prestimulus Period Begins",tNow);
            ChangeStateTo(statePreStim%, tNow);
        endif;
        
    case iState% = stateDone% then
        
        Stop%();
        iStatus% := 0;
        
    else
        
        ' Unknown state!
        Message("Unknown state=" + str$(iState%));
        halt;
        
    endcase;
    
    
	return iStatus%;
end;


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc ChangeStateTo(stateTo%, tStart)
	iState% := stateTo%;
	if tStart > 0 then tStateStart := tStart; endif;
end;