''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	Fixation Point parameters START
'
'	These vars and funcs control the parameters for the fixation point stored in the registry. 
'
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

#include "../util/RigName.s2s"
#include "../util/UsreyUtil.s2s"


var WindowRadius;
var FixationX, FixationY;
var FixationR%, FixationG%, FixationB%;
var FixationColor$;
var iFixationColor%;
var FixationDiameter;
var FixationColorList$[4]; 
var FixationArg$;


GetFixationPointParameters();


func GetFixationArg$()
    return FixationArg$;
end

proc GetFixationPointParameterValues(&x, &y, &d, &wr)
    x := FixationX;
    y := FixationY;
    d := FixationDiameter;
    wr := WindowRadius;
    return;
end


proc GetFixationPointParameters()
	var stmp$;
	var key$;
	key$ := GetRigName$() + "\\" + GetCurrentConfiguration$() + "\\FixationPoint";
	Profile(key$, "WindowRadius", "1", stmp$);
	WindowRadius := val(stmp$);

	Profile(key$, "FixationX", "0", stmp$);
	FixationX := val(stmp$);
	Profile(key$, "FixationY", "0", stmp$);
	FixationY := val(stmp$);
	Profile(key$, "FixationColor", "0", stmp$);
	iFixationColor% := val(stmp$);
    
    Profile(key$, "FixationR", "0", stmp$);
	FixationR% := val(stmp$);
    Profile(key$, "FixationG", "0", stmp$);
	FixationG% := val(stmp$);
    Profile(key$, "FixationB", "0", stmp$);
	FixationB% := val(stmp$);

	FixationColorList$[0]:="red"; 
	FixationColorList$[1]:="green"; 
	FixationColorList$[2]:="blue"; 
    FixationColorList$[3]:="custom";
    if iFixationColor% < 3 then
        FixationColor$ := FixationColorList$[iFixationColor%];
    else
        FixationColor$ := "(" + Str$(FixationR%) + "/" + Str$(FixationG%) + "/" + Str$(FixationB%) + ")";
    endif;

	Profile(key$, "FixationDiameter", "0.5", stmp$);
	FixationDiameter := val(stmp$);

	' Form the argument for applications. Convenience for passing args. 
	FixationArg$ := " -f " + str$(FixationX) + "," + str$(FixationY) + "," + str$(FixationDiameter) + "," + FixationColor$;
    'printlog("Fixation arg is %s\n",FixationArg$);
end;

proc SaveFixationPointParameters()
	var key$;
	key$ := GetRigName$() + "\\" + GetCurrentConfiguration$() + "\\FixationPoint";
	Profile(key$, "WindowRadius", str$(WindowRadius));
	Profile(key$, "FixationX", str$(FixationX));
	Profile(key$, "FixationY", str$(FixationY));
	Profile(key$, "FixationColor", str$(iFixationColor%));
	Profile(key$, "FixationDiameter", str$(FixationDiameter));
    Profile(key$, "FixationR", str$(FixationR%));
    Profile(key$, "FixationB", str$(FixationB%));
    Profile(key$, "FixationG", str$(FixationG%));
end;


func FixationPointDialog%()

	var i%;
	GetFixationPointParameters();
	DlgCreate("Fixation parameters: " + GetCurrentConfiguration$(), 25, 10);
	DlgReal(1, "Fixation X:", -20, 20);
	DlgReal(2, "Fixation Y:", -20, 20);
	DlgReal(3, "Fixation diam:", .1, 5);
	DlgReal(4, "Window radius:", .1, 30);
	DlgList(5, "Color:", FixationColorList$[],4);
    DlgInteger(6, "Red Value (0-255):", 0, 255);
    DlgInteger(7, "Green Value (0-255):", 0, 255);
    DlgInteger(8, "Blue Value (0-255):", 0, 255);
    
    DlgAllow(0xffff, 0, FixationPointDialogChanged%);
	i% := DlgShow(FixationX, FixationY, FixationDiameter, WindowRadius, iFixationColor%, FixationR%, FixationG%, FixationB%);	

	' If user cancelled, reload params
	if i% = 0 then
		GetFixationPointParameters();
	else
		SaveFixationPointParameters();
        GetFixationPointParameters();  'Get parameters again, fills FixationArg$
	endif

	return 1;
end;


func FixationPointDialogChanged%(item%)
    
    if DlgValue(5) = 3 then  'If we are doing a custom fixation point color
        DlgEnable(1,6);
        DlgEnable(1,7);
        DlgEnable(1,8);
    else
        DlgEnable(0,6);
        DlgEnable(0,7);
        DlgEnable(0,8);
    endif;
    
    return 1;
    
end;


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	Fixation Point parameters END
'
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''



''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	ASL Output File Control START
'
'	These vars and funcs control the DIGLOW outputs to manage the ASL output file 
'
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

var ASLOutputFileIsOpen%;
var ASLOutputFileIsRecording%;
var ASLOutputFilename$;

proc OpenASLOutputFile()
    if ASLOutputFileIsOpen% = 0 then
        SafeSampleKey("I");  'Open output file
        ASLOutputFileIsOpen% := 1;  'Note that it is open
    else
        message("Coding error, attempt to open ASL file but file is currently open!  Tell Jeff!");
    endif;
    
    ASLOutputFilename$ := FindCurrentASLFile$();
    SampleText("ASL output file opened, file name is: " + ASLOutputFilename$);
    printlog("ASL output file opened, file name is: %s\n",ASLOutputFilename$);
end


proc CloseASLOutputFile()
    var whoops%;
    'Force recording to stop if we are currently recording.  This is improper usage, but check just in case
    if ASLOutputFileIsRecording% = 1 then
        SafeSampleKey("w");  'Stop recording
        ASLOutputFileIsRecording% := 0;  'Note that we are not recording
        SampleText("ASL output file recording stopped");
        whoops% := 1;
    endif;
      
    if ASLOutputFileIsOpen% = 1 then
        SafeSampleKey("i");  'Close output file
        ASLOutputFileIsOpen% := 0;  'Note that it is closed
        SampleText("ASL output file closed");
    else
        message("Coding error, attempt to close ASL file but no file is currently open!  Tell Jeff!");
    endif;
    
    SafeSampleKey("Z");  'zero the DIGLOWs
    
    if whoops% = 1 then
        message("Coding error, ASL file closed while recording!  Recording successfully stopped, but tell Jeff!");
    endif;
end

proc StartASLRecording()
    docase
    case ASLOutputFileIsOpen% = 0 then 
        message("Coding error, attempt to begin recording on ASL file but no file is currently open!  Tell Jeff!");
    case ASLOutputFileIsRecording% = 0 then
        SafeSampleKey("W");  'Begin recording
        ASLOutputFileIsRecording% := 1;  'Note that we are recording
        SampleText("ASL output file recording started");
    else
        message("Coding error, attempt to begin recording on ASL file but file is currently recording!  Tell Jeff!");
    endcase;
end


proc StopASLRecording()
    docase
    case ASLOutputFileIsOpen% = 0 then 
        message("Coding error, attempt to stop recording on ASL file but no file is currently open!  Tell Jeff!");
    case ASLOutputFileIsRecording% = 1 then
        SafeSampleKey("w");  'Stop recording
        ASLOutputFileIsRecording% := 0;  'Note that we are not recording
        SampleText("ASL output file recording stopped");
        SafeSampleKey("Z");  'zero the DIGLOWs
    else
        message("Coding error, attempt to stop recording on ASL file but file is not currently recording!  Tell Jeff!");
    endcase;
end


func FindCurrentASLFile$()
    'This function finds the newest ASL file in the known location of the ASL files - this should be the current file
    'The whole point of this is so that we can report the name of the associated ASL file in the .smr file.
    const maxFiles% := 1000;  'seems reasonable
    var publicDir$;
    var ASLDir$;
    var oldDir$;
    var numFiles%;
    var listOfFiles$[maxFiles%];
    var year%[maxFiles%];
    var month%[maxFiles%];
    var day%[maxFiles%];
    var hour%[maxFiles%];
    var minute%[maxFiles%];
    var second%[maxFiles%];
    var i%;
    var j%;
    var retStr$;
    
    'Get directories
    publicDir$ := System$("PUBLIC");  'get public user directory
    ASLDir$ := publicDir$ + "\\Documents\\Applied Science Laboratories\\Eye-Trac 6 data\\";  'add known location of ASL files    
    oldDir$ := FilePath$();  'we will come back to wherever we were
    
    'Move to directory where ASL files are written
    FilePathSet(ASLDir$);
    
    'Get a list of ASL files (.eyd)
    numFiles% := FileList(listOfFiles$[],-1,"*.eyd");
    
    'Return working directory to wherever it was
    FilePathSet(oldDir$); 
    
    'Parse all filenames
    'File format is YYYY-MM-DD-HH.MM.SS
    for i% := 0 to numFiles%-1 do
        year%[i%] := Val(Mid$(listOfFiles$[i%],1,4));
        month%[i%] := Val(Mid$(listOfFiles$[i%],6,2));
        day%[i%] := Val(Mid$(listOfFiles$[i%],9,2));
        hour%[i%] := Val(Mid$(listOfFiles$[i%],12,2));
        minute%[i%] := Val(Mid$(listOfFiles$[i%],15,2));
        second%[i%] := Val(Mid$(listOfFiles$[i%],18,2));
    next
    
    'Find position of most recent file in ListOfFiles$[] based on filename
    j% := NewestASLFile%(year%[],month%[],day%[],hour%[],minute%[],second%[],numFiles%);
    
    if j% = -1 then
        message("Unable to find name of current ASL file!!!");
        retStr$ := "Most recent ASL file not found in " + ASLDir$;
        return retStr$;
    else
        retStr$ := ASLDir$ + listOfFiles$[j%];
        return retStr$;
    endif;
    
end

func NewestASLFile%(year%[],month%[],day%[],hour%[],minute%[],second%[],numFiles%);
    
    var count%;
    var position%;
    var myloc%;
    var mymax%;
    var i%;
    
    'Check to see if one file has a latest year, etc.
    myloc% := Max(year%[]);
    mymax% := year%[myloc%];
    count% := 0;
    for i% := 0 to numFiles%-1 do
        if year%[i%] = mymax% then
            count% += 1;
            position% := i%;
        endif;
    next
    if count% = 1 then
        return position%
    endif
    
    myloc% := Max(month%[]);
    mymax% := month%[myloc%];
    count% := 0;
    for i% := 0 to numFiles%-1 do
        if month%[i%] = mymax% then
            count% += 1;
            position% := i%;
        endif;
    next
    if count% = 1 then
        return position%
    endif
    
    myloc% := Max(day%[]);
    mymax% := day%[myloc%];
    count% := 0;
    for i% := 0 to numFiles%-1 do
        if day%[i%] = mymax% then
            count% += 1;
            position% := i%;
        endif;
    next
    if count% = 1 then
        return position%
    endif
    
    myloc% := Max(hour%[]);
    mymax% := hour%[myloc%];
    count% := 0;
    for i% := 0 to numFiles%-1 do
        if hour%[i%] = mymax% then
            count% += 1;
            position% := i%;
        endif;
    next
    if count% = 1 then
        return position%
    endif
    
    myloc% := Max(minute%[]);
    mymax% := minute%[myloc%];
    count% := 0;
    for i% := 0 to numFiles%-1 do
        if minute%[i%] = mymax% then
            count% += 1;
            position% := i%;
        endif;
    next
    if count% = 1 then
        return position%
    endif
    
    myloc% := Max(second%[]);
    mymax% := second%[myloc%];
    count% := 0;
    for i% := 0 to numFiles%-1 do
        if second%[i%] = mymax% then
            count% += 1;
            position% := i%;
        endif;
    next
    if count% = 1 then
        return position%
    else
        return -1;  'failure
    endif
    
end

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	ASL Output File Control END
'
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''