' $Id$

'****h* Spike2Util/MiscUtilities
' FUNCTION
' Miscellaneous utilities useful in experimental scripts. 
'****


'****f* Spike2Util/MiscUtilities/IsInsideCircle%
' NAME
' IsInsideCircle%(x, y, xCenter, yCenter, r)
' SYNOPSIS
' Test whether a point is inside a circle.
' INPUTS
' x,y		- point to be tested
' xCenter,yCenter	- center of circle
' r				- radius of the circle
' RETURN VALUE
' Returns 1 if (x, y) is inside (or on the circumference of) the circle, 
' 0 if its outside the circle. 
'****

#include "ElectrodeUtilities.s2s"


func IsInsideCircle%(x, y, xCenter, yCenter, r)
    if ((x-xCenter)*(x-xCenter) + (y-yCenter)*(y-yCenter)) > (r*r) then
        return 0;
    else
        return 1;
    endif
end



'****f* Spike2Util/MiscUtilities/IsOutsideCircle%
' NAME
' IsOutsideCircle%
' SYNOPSIS
' Test whether a point is outside a circle.
' INPUTS
' x,y		- point to be tested
' xCenter,yCenter	- center of circle
' r				- radius of the circle
' RETURN VALUE
' Returns 1 if (x, y) is outside the circle, 0 otherwise.
'****

func IsOutsideCircle%(x, y, xCenter, yCenter, r)
'    return 1 - IsInsideCircle(x, y, xCenter, yCenter, r);
    if ((x-xCenter)*(x-xCenter) + (y-yCenter)*(y-yCenter)) > (r*r) then
        return 1;
    else
        return 0;
    endif
end



'****f* Spike2Util/MiscUtilities/GetParameterProgression%
' NAME
' GetParameterProgression%
' SYNOPSIS
' Prepares an array containing a set of parameters that progress from a starting
' value to an ending value. The progression can be linear or logarithmic, and 
' the order of the parameters can be randomized.
' INPUTS
' n% : Number of values to generate
' result[] : Parameter values are placed here
' indices%[] : Indices into result[] array. Use these to obtain the progression requested
' firstval : first/starting parameter value 
' lastval : last/ending parameter value
' ilog% : Generate linear (log) progression if ilog = 0 (1). 
' irandom% : randomize order of indices%[] when this <> 0
' RETURN VALUE
' Returns 0 on success, nonzero value otherwise (bad value for n%, or else result/indices 
' not large enough)
' NOTES
' For log progressions both firstval and lastval must be > 0. 
'
' The array indices%[] is the order you should follow when accessing the 
' values in result[]. In other words, the order of the parameters is 
' result[indices%[0]], result[indices%[1]], ... 
' In the case of a non-randomized progression you can use this method or you can 
' safely use result[0], result[1], ....
' SEE ALSO
' GetRepeatedParameterProgression
'****

func GetParameterProgression%(n%, result[], indices%[], firstval, lastval, ilog%, irandom%)
    var status% := 0;
    docase
    case Len(result[]) < n% or Len(indices%[]) < n% then
        status% := 1;
    case n% < 2 then
        status% := 1;
    case ilog% <> 0 and (firstval <= 0 or lastval<= 0) then
        status% := 1;
    else
        var stepsize;
        var i%;
        for i% := 0 to n%-1 do
            indices%[i%] := i%;
        next
        if ilog% <> 0 then
            var firstlog, lastlog;
            ' Generate log progression
            firstlog := log(firstval);
            lastlog := log(lastval);
            stepsize := (lastlog - firstlog)/(n%-1);
            for i% := 0 to n%-1 do
                result[i%] := pow(10, firstlog + i% * stepsize);
            next;
        else
            ' Generate linear progression
            stepsize := (lastval - firstval)/(n%-1);
            for i% := 0 to n%-1 do
                result[i%] := firstval + i% * stepsize;
            next;
        endif
        
        if irandom% <> 0 then
            Shuffle%(n%, indices%[]);
        endif
        
    endcase
    return status%;
end

'****f* Spike2Util/MiscUtilities/GetRepeatedParameterProgression%
' NAME
' GetRepeatedParameterProgression%(n%, nr%, result[], indices%[], firstval, lastval, ilog%, irandom%)
' SYNOPSIS
' Prepares an array containing a set of parameters that progress from a starting
' value to an ending value. The progression can be linear or logarithmic, and 
' the order of the parameters can be randomized. In addition, the set may be repeated
' any number of times. 
' n% : Number of values to generate
' nr% : Number of repeats to generate
' result[] : Parameter values are placed here
' indices%[] : Indices into result[] array. Use these to obtain the progression requested
' firstval : first/starting parameter value 
' lastval : last/ending parameter value
' ilog% : Generate linear (log) progression if ilog = 0 (1). 
' irandom% : randomize order of indices%[] when this <> 0
' RETURN VALUE
' Returns 0 on success, nonzero value otherwise (bad value for n%, or else result/indices 
' not large enough)
' NOTES
' For log progressions both firstval and lastval must be > 0. 
'
' The array indices%[] is the order you should follow when accessing the 
' values in result[]. In other words, the order of the parameters is 
' result[indices%[0]], result[indices%[1]], ... 
' In the case of a non-randomized progression you can use this method or you can 
' safely use result[0], result[1], ....
' 
' The indices always complete a set of n% values (0...n%-1) before starting another set. 
' SEE ALSO
' GetParameterProgression
'****


func GetRepeatedParameterProgression%(n%, nr%, result[], indices%[], firstval, lastval, ilog%, irandom%)
    var status% := 0;
    docase
    case Len(result[]) < n%*nr% or Len(indices%[]) < n%*nr% then
        status% := 1;
    case n% < 2 or nr% < 1 then
        status% := 1;
    else
        var ir%;
        var is%;
        for ir% := 0 to nr%-1 do
            is% := GetParameterProgression%(n%, result[ir%*n%:n%], indices%[ir%*n%:n%], firstval, lastval, ilog%, irandom%);
            if is% <> 0 then
                PrintLog("GetRepeatedParameterProgression%()", "Error (" + str$(is%) + ")during repeat# " + str$(ir%));
                status% := is%;
            endif
        next
    endcase
    return status%;
end





'****f* Spike2Util/MiscUtilities/GetRepeatedSymmetricParameterProgression%
' NAME
' GetRepeatedSymmetricParameterProgression%(n%, nr%, result[], indices%[], centerval, lastval, ilog%, irandom%)
' SYNOPSIS
' Prepares an array containing a set of parameters that progress from a center
' value to an ending value on each side. E.g. - if n% is 3, centerval is 1 and lastval is 1.5, linear progression
' would return [1 1.25 1.5] AND [0.5 0.75 1], which would then concatenate to [0.5 0.75 1 1.25 1.5]
' The progression can be linear or logarithmic (logarithmic not yet implemented), and 
' the order of the parameters can be randomized. In addition, the set may be repeated
' any number of times. 
' n% : Number of values to generate
' nr% : Number of repeats to generate
' result[] : Parameter values are placed here
' indices%[] : Indices into result[] array. Use these to obtain the progression requested
' centerval : first/starting parameter value 
' lastval : last/ending parameter value
' ilog% : Generate linear (log) progression if ilog = 0 (1). 
' irandom% : randomize order of indices%[] when this <> 0
' RETURN VALUE
' Returns 0 on success, nonzero value otherwise (bad value for n%, or else result/indices 
' not large enough)
' NOTES
' For log progressions both centerval and lastval must be > 0. 
'
' The array indices%[] is the order you should follow when accessing the 
' values in result[]. In other words, the order of the parameters is 
' result[indices%[0]], result[indices%[1]], ... 
' In the case of a non-randomized progression you can use this method or you can 
' safely use result[0], result[1], ....
' 
' The indices always complete a set of n% values (0...n%-1) before starting another set. 
' SEE ALSO
' GetParameterProgression
'****


func GetRepeatedSymmetricParameterProgression%(n%, nr%, result[], indices%[], centerval, lastval, ilog%, irandom%)
    var status% := 0;
    docase
    case Len(result[]) < ((2*n%)-1)*nr% or Len(indices%[]) < ((2*n%)-1)*nr% then
        status% := 1;
    case n% < 2 or nr% < 1 then
        status% := 1;
    else
        var ir%;
        var is%;
        for ir% := 0 to nr%-1 do
            is% := GetSymmetricParameterProgression%(n%, result[ir%*((2*n%)-1):((2*n%)-1)], indices%[ir%*((2*n%)-1):((2*n%)-1)], centerval, lastval, ilog%, irandom%);
            if is% <> 0 then
                PrintLog("GetRepeatedSymmetricParameterProgression%()", "Error (" + str$(is%) + ")during repeat# " + str$(ir%));
                status% := is%;
            endif
        next
    endcase
    return status%;
end


'****f* Spike2Util/MiscUtilities/GetSymmetricParameterProgression%
' NAME
' GetSymmetricParameterProgression%
' SYNOPSIS
' Prepares an array containing a set of parameters that progress from a center
' value to an ending value, and from that center value to an ending value on the opposite "side". 
' E.g. - if n% is 3, centerval is 1 and lastval is 1.5, linear progression
' would return [1 1.25 1.5] AND [0.5 0.75 1], which would then concatenate to [0.5 0.75 1 1.25 1.5]
' The progression can be linear or logarithmic (not yet implemented), and 
' the order of the parameters can be randomized.
' INPUTS
' n% : Number of values to generate
' result[] : Parameter values are placed here
' indices%[] : Indices into result[] array. Use these to obtain the progression requested
' centerval : first/starting parameter value 
' lastval : last/ending parameter value
' ilog% : Generate linear (log) progression if ilog = 0 (1). 
' irandom% : randomize order of indices%[] when this <> 0
' RETURN VALUE
' Returns 0 on success, nonzero value otherwise (bad value for n%, or else result/indices 
' not large enough)
' NOTES
' For log progressions both centerval and lastval must be > 0. 
'
' The array indices%[] is the order you should follow when accessing the 
' values in result[]. In other words, the order of the parameters is 
' result[indices%[0]], result[indices%[1]], ... 
' In the case of a non-randomized progression you can use this method or you can 
' safely use result[0], result[1], ....
' SEE ALSO
' GetRepeatedParameterProgression
'****

func GetSymmetricParameterProgression%(n%, result[], indices%[], centerval, lastval, ilog%, irandom%)
    var status% := 0;
    docase
    case Len(result[]) < ((2*n%)-1) or Len(indices%[]) < ((2*n%)-1) then
        status% := 1;
    case n% < 2 then
        status% := 1;
    case ilog% <> 0 and (centerval <= 0 or lastval<= 0) then
        status% := 1;
    else
        var stepsize;
        var i%;
        for i% := 0 to ((2*n%)-2) do
            indices%[i%] := i%;
        next
        if ilog% <> 0 then   'not yet implemented
'            var firstlog, lastlog;
'            ' Generate log progression
'            firstlog := log(firstval);
'            lastlog := log(lastval);
'            stepsize := (lastlog - firstlog)/(n%-1);
'            for i% := 0 to n%-1 do
'                result[i%] := pow(10, firstlog + i% * stepsize);
'            next;
        else
            ' Generate linear progression
            stepsize := (lastval - centerval)/(n%-1);  'if centerval 1, lastval 3, n=3, then stepsize = 1
            for i% := 1-n% to n%-1 do   'if n% = 3, i% = -2:2
                result[i%+n%-1] := centerval + i% * stepsize;  'result[] will fill 0:4,  vals will be [-1:3] - perfect.
            next;
        endif
        
        if irandom% <> 0 then
            Shuffle%(((2*n%)-1), indices%[]);
        endif
        
    endcase
    return status%;
end






'****f* Spike2Util/MiscUtilities/GetParameterProgressionWithConstant%
' NAME
' GetParameterProgressionWithConst%
' SYNOPSIS
' Prepares an array containing a set of parameters that progress from a starting
' value to an ending value. Also includes a specified number of insertions of a
' constant value.  The progression can be linear or logarithmic, and 
' the order of the parameters (with constants) can be randomized.  If the order is
' not randomized, all constants will occur at the end.
' INPUTS
' n% : Number of parameter values to generate
' nc% : Number of constant values to include
' c: Value of the constant
' result[] : Parameter values are placed here
' indices%[] : Indices into result[] array. Use these to obtain the progression requested
' firstval : first/starting parameter value 
' lastval : last/ending parameter value
' ilog% : Generate linear (log) progression if ilog = 0 (1). 
' irandom% : randomize order of indices%[] when this <> 0
' RETURN VALUE
' Returns 0 on success, nonzero value otherwise (bad value for n%, or else result/indices 
' not large enough)
' NOTES
' For log progressions both firstval and lastval must be > 0. 
'
' The array indices%[] is the order you should follow when accessing the 
' values in result[]. In other words, the order of the parameters is 
' result[indices%[0]], result[indices%[1]], ... 
' In the case of a non-randomized progression you can use this method or you can 
' safely use result[0], result[1], ....
' SEE ALSO
' GetRepeatedParameterProgression
'****

func GetParameterProgressionWithConstant%(n%, nc%, c, result[], indices%[], firstval, lastval, ilog%, irandom%)
    var status% := 0;
    var nn%;
    
    nn% := n% + nc%;  'total number of stimuli
    docase
    case Len(result[]) < nn% or Len(indices%[]) < nn% then
        status% := 1;
    case nn% < 2 then
        status% := 1;
    case ilog% <> 0 and (firstval <= 0 or lastval<= 0) then
        status% := 1;
    else
        var stepsize;
        var i%;
        for i% := 0 to nn%-1 do
            indices%[i%] := i%;
        next
        if ilog% <> 0 then
            var firstlog, lastlog;
            ' Generate log progression
            firstlog := log(firstval);
            lastlog := log(lastval);
            stepsize := (lastlog - firstlog)/(n%-1);
            for i% := 0 to n%-1 do
                result[i%] := pow(10, firstlog + i% * stepsize);
            next;
        else
            ' Generate linear progression
            stepsize := (lastval - firstval)/(n%-1);
            for i% := 0 to n%-1 do
                result[i%] := firstval + i% * stepsize;
            next;
        endif
        
        'add in constants
        for i% := n% to nn%-1 do
            result[i%] := c;
        next
        
        if irandom% <> 0 then
            Shuffle%(nn%, indices%[]);
        endif
        
    endcase
    return status%;
end

'****f* Spike2Util/MiscUtilities/GetRepeatedParameterProgressionWithConstant%
' NAME
' GetRepeatedParameterProgressionWithConstant%(n%, nc%, c, nr%, result[], indices%[], firstval, lastval, ilog%, irandom%)
' SYNOPSIS
' Prepares an array containing a set of parameters that progress from a starting
' value to an ending value. The progression can be linear or logarithmic, and 
' the order of the parameters can be randomized. In addition, the set may be repeated
' any number of times. 
' n% : Number of values to generate
' nc% : Number of constant values to include
' c: Value of the constant
' nr% : Number of repeats to generate
' result[] : Parameter values are placed here
' indices%[] : Indices into result[] array. Use these to obtain the progression requested
' firstval : first/starting parameter value 
' lastval : last/ending parameter value
' ilog% : Generate linear (log) progression if ilog = 0 (1). 
' irandom% : randomize order of indices%[] when this <> 0
' RETURN VALUE
' Returns 0 on success, nonzero value otherwise (bad value for n%, or else result/indices 
' not large enough)
' NOTES
' For log progressions both firstval and lastval must be > 0. 
'
' The array indices%[] is the order you should follow when accessing the 
' values in result[]. In other words, the order of the parameters is 
' result[indices%[0]], result[indices%[1]], ... 
' In the case of a non-randomized progression you can use this method or you can 
' safely use result[0], result[1], ....
' 
' The indices always complete a set of n% values (0...n%-1) before starting another set. 
' SEE ALSO
' GetParameterProgression
'****


func GetRepeatedParameterProgressionWithConstant%(n%, nc%, c, nr%, result[], indices%[], firstval, lastval, ilog%, irandom%)
    var status% := 0;
    var nn%;
    
    nn% := n% + nc%;
    docase
    case Len(result[]) < nn%*nr% or Len(indices%[]) < nn%*nr% then
        status% := 1;
    case nn% < 2 or nr% < 1 then
        status% := 1;
    else
        var ir%;
        var is%;
        for ir% := 0 to nr%-1 do
            is% := GetParameterProgressionWithConstant%(n%, nc%, c, result[ir%*nn%:nn%], indices%[ir%*nn%:nn%], firstval, lastval, ilog%, irandom%);
            if is% <> 0 then
                PrintLog("GetRepeatedParameterProgression%()", "Error (" + str$(is%) + ")during repeat# " + str$(ir%));
                status% := is%;
            endif
        next
    endcase
    return status%;
end






'****f* Spike2Util/MiscUtilities/GetRepeatedParameterProgressionTwoWayContrast%
' NAME
' GetRepeatedParameterProgressionTwoWayContrast%(n%, nr%, result[], indices%[], firstval, lastval, ilog%, irandom%)
' SYNOPSIS
' Prepares an array containing a set of parameters that progress from a starting
' value to an ending value, and then from the ending value back to the starting value. 
' The progression can be linear or logarithmic, and the set may be repeated any number of 
' times. Unlike other versions of GRPP, the parameter order CANNOT be randomized, as the
' ascending/descending aspect of the parameters is the fundamental point. Note that the 
' output of the second half of this progression will be displaced +100 from the output of
' the first half, e.g. the parameter values written to result[] might be [10 20 40 80 180 140 120 110]
' This is used to facilitate online plotting of the responses to the ascending and descending
' portions of the progression separately. Further steps are required in the main code to create
' a parallel version of result[] with the literal values on the descending side. The code is
' specifically designed for contrast; there is no principled reason that the +100 convention
' would not work for some other parameters (e.g. spFreq, tempFreq, area, innerDiam) but it would
' be obviously problematic for values that can extend beyond 100 (orientation, null test).
' n% : Number of values to generate for the ascending portion of the progression; the endpoints 
'      will be doubled, so the actual length of an ascending/descending sequence will be 2*n%
' nr% : Number of repeats to generate
' result[] : Parameter values are placed here, with the latter, descending half incremented by 100
' indices%[] : Indices into result[] array. Use these to obtain the progression requested
' firstval : first/starting parameter value 
' lastval : last/ending parameter value
' ilog% : Generate linear (log) progression if ilog = 0 (1). 
' RETURN VALUE
' Returns 0 on success, nonzero value otherwise (bad value for n%, or else result/indices 
' not large enough)
' NOTES
' For log progressions both firstval and lastval must be > 0. 
'
' The array indices%[] is the order you should follow when accessing the 
' values in result[]. In other words, the order of the parameters is 
' result[indices%[0]], result[indices%[1]], ... 
' In the case of a non-randomized progression you can use this method or you can 
' safely use result[0], result[1], ....
' 
' The indices always complete a set of n% values (0...n%-1) before starting another set. 
' SEE ALSO
' GetParameterProgression
'****


func GetRepeatedParameterProgressionTwoWayContrast%(n%, nr%, result[], indices%[], firstval, lastval, ilog%)
    var status% := 0;
    docase
    case Len(result[]) < 2*n%*nr% or Len(indices%[]) < 2*n%*nr% then
        status% := 1;
    case n% < 2 or nr% < 1 then
        status% := 1;
    else
        var ir%;
        var is%;
        for ir% := 0 to nr%-1 do
            is% := GetTwoWayParameterProgression%(n%, result[ir%*2*n%:2*n%], indices%[ir%*2*n%:2*n%], firstval, lastval, ilog%, 100);
            if is% <> 0 then
                PrintLog("GetRepeatedParameterProgression%()", "Error (" + str$(is%) + ")during repeat# " + str$(ir%));
                status% := is%;
            endif
        next
    endcase
    return status%;
end




'****f* Spike2Util/MiscUtilities/GetTwoWayParameterProgression%
' NAME
' GetTwoWayParameterProgression%
' SYNOPSIS
' Prepares an array containing a set of parameters that progress from a starting
' value to an ending value, then repeat the ending value and return to the starting
' value. The second half of the progression can be offset by an arbitrary value. 
' The progression can be linear or logarithmic, but the order of the parameters
' cannot be randomized, as the purpose is for a structured ascending/descending design.
' INPUTS
' n% : Number of values to generate for the ascending portion of the parameters. The
'      descending portion of the parameters will be the same length, so the total number
'      of parameters generated will be 2*n%
' result[] : Parameter values are placed here
' indices%[] : Indices into result[] array. Use these to obtain the progression requested
' firstval : first/starting parameter value 
' lastval : last/ending parameter value
' ilog% : Generate linear (log) progression if ilog = 0 (1). 
' secondhalfoffset : a value to add to each of the parameters in the second half
' RETURN VALUE
' Returns 0 on success, nonzero value otherwise (bad value for n%, or else result/indices 
' not large enough)
' NOTES
' For log progressions both firstval and lastval must be > 0. 
'
' The array indices%[] is the order you should follow when accessing the 
' values in result[]. In other words, the order of the parameters is 
' result[indices%[0]], result[indices%[1]], ... 
' In the case of a non-randomized progression you can use this method or you can 
' safely use result[0], result[1], ....
' SEE ALSO
' GetRepeatedParameterProgression
'****

func GetTwoWayParameterProgression%(n%, result[], indices%[], firstval, lastval, ilog%, secondhalfoffset)
    var status% := 0;
    docase
    case Len(result[]) < 2*n% or Len(indices%[]) < 2*n% then
        status% := 1;
    case n% < 2 then
        status% := 1;
    case ilog% <> 0 and (firstval <= 0 or lastval<= 0) then
        status% := 1;
    else
        var stepsize;
        var i%;
        for i% := 0 to (2*n%)-1 do
            indices%[i%] := i%;
        next
        if ilog% <> 0 then
            var firstlog, lastlog;
            ' Generate log progression
            firstlog := log(firstval);
            lastlog := log(lastval);
            stepsize := (lastlog - firstlog)/(n%-1);
            for i% := 0 to n%-1 do
                result[i%] := pow(10, firstlog + i% * stepsize);
                result[(2*n%)-1-i%]  := secondhalfoffset + pow(10, firstlog + i% * stepsize);
            next;
        else
            ' Generate linear progression
            stepsize := (lastval - firstval)/(n%-1);
            for i% := 0 to n%-1 do
                result[i%] := firstval + i% * stepsize;
                result[(2*n%)-1-i%]  := secondhalfoffset + firstval + i% * stepsize;
            next;
        endif
        
    endcase
    return status%;
end





'****f* Spike2Util/MiscUtilities/Shuffle%
' NAME
' Shuffle%(n%, list%[])
' SYNOPSIS
' Shuffles a list of INDICES.  Overwrites any values in list%[], up to and including index n%-1.
' INPUTS
' n% : the number of elements in list%[] to turn to shuffled indices
' list%[] : array of values, overwritten with shuffled indices from 0:n%-1 in locations 0:n%-1
' RETURN VALUE
' Returns 0 on success, 1 otherwise (n% < 1 or length of list%[] less than n%). 
'****

func Shuffle%(n%, list%[])
    var status% := 0;
    var i%, si%, tmp%;
    if n% < 1 or Len(list%[]) < n% then
        status% := 1;
    else
        ' populate the list%[] array with indices. 
        for i% := 0 to n%-1 do
            list%[i%] := i%; 
        next;
        
        ' Step thru the indices from 0 to n%-2. At each index, we consider the array starting at the 
        ' current index and ending at the end of the array. If there are M elements in that array, 
        ' draw a random number between 0 and M-1. Swap the index at that position with the index at 
        ' position 0. Step to the next index and repeat. 
        for i% := 0 to n%-2 do
            si% := Rand(n%-i%, i%);
            tmp% := list%[i%];
            list%[i%] := list%[si%];
            list%[si%] := tmp%;
        next;
    endif
    return status%;
end


'****f* Spike2Util/MiscUtilities/ShuffleList%
' NAME
' Shuffle%(list%[])
' SYNOPSIS
' Shuffles a list of integer VALUES. 
' INPUTS
' list%[] : array of values, entire array is shuffled
' RETURN VALUE
' Returns 0 (no obvious error cases identified)
'****


func ShuffleList%(list%[])
    var status% := 0;
    var i%, si%, tmp%;

    ' Step thru the indices from 0 to n%-2. At each index, we consider the array starting at the 
    ' current index and ending at the end of the array. If there are M elements in that array, 
    ' draw a random number between 0 and M-1. Swap the index at that position with the index at 
    ' position 0. Step to the next index and repeat. 
    for i% := 0 to Len(list%[])-2 do
        si% := Rand(Len(list%[])-i%, i%);
        tmp% := list%[i%];
        list%[i%] := list%[si%];
        list%[si%] := tmp%;
    next;
    return status%;  'this does nothing right now, because it can't really break.
end


'****f* Spike2Util/MiscUtilities/ShuffleList
' NAME
' Shuffle(list[])
' SYNOPSIS
' Shuffles a list of float VALUES. 
' INPUTS
' list[] : array of values, entire array is shuffled
' RETURN VALUE
' Returns 0 (no obvious error cases identified)
'****

func ShuffleList(list[])
    var status% := 0;
    var i%, si%, tmp;

    ' Step thru the indices from 0 to n%-2. At each index, we consider the array starting at the 
    ' current index and ending at the end of the array. If there are M elements in that array, 
    ' draw a random number between 0 and M-1. Swap the index at that position with the index at 
    ' position 0. Step to the next index and repeat. 
    for i% := 0 to Len(list[])-2 do
        si% := Rand(Len(list[])-i%, i%);
        tmp := list[i%];
        list[i%] := list[si%];
        list[si%] := tmp;
    next;
    return status%;  'this does nothing right now, because it can't really break.
end



'****f* Spike2Util/MiscUtilities/NonConsecutiveShuffle
' NAME
' NonConsecutiveShuffle%(result%[],consec%[],nonconsec%[],n%)
' SYNOPSIS
' Shuffles together two lists of integer VALUES.  Values in nonconsec%[]
' INPUTS
' result%[] : shuffled values are returned in this array
' consec%[] : shuffled values which are allowed to be consecutive
' nonconsec%[] : shuffled values which are constrained to be non-consecutive
' n% : The minimum number of intervening values
' RETURN VALUE
' Returns 0 (no obvious error cases identified)
'****
'
'This function was going to be WAY TOO HARD and is not implemented as I've really got a lot more work to do (jj)



'****f* Spike2Util/MiscUtilities/GetRealArrayNAsString%
' NAME
' GetRealArrayNAsString$(a[], n%)
' SYNOPSIS
' Converts the elements of a[] to a comma-separated list. 
' INPUTS
' a[] : array of values
' n% : number of elements in a[]
' RETURN VALUE
' Returns a string containing comma-separated list of values from the array.
' NOTES
'****

func GetRealArrayNAsString$(a[], n%)
    var s$;
    var i%;
    s$ := str$(a[0]);
    for i% := 1 to n%-1 do
        s$ += ",";
        s$ += str$(a[i%]);
    next
    return s$;
end

'****f* Spike2Util/MiscUtilities/GetRealArrayAsString
' NAME
' GetRealArrayAsString$(r[], indices%[])
' SYNOPSIS
' Converts the elements of r[] (indexed by indices%[], as from GetParameterProgression)
' to a comma-separated list. 
' INPUTS
' r[] : array of values
' indices%[] : indices for accessing r[]
' RETURN VALUE
' Returns a string containing comma-separated list of values from the array.
' NOTES
' The arrays r[] and indices%[] are like those returned from GetParameterProgression. 
'****

        
func GetRealArrayAsString$(r[], indices%[])
    return GetRealArrayAsStringSep$(r[], indices%[], ",");
end

'****f* Spike2Util/MiscUtilities/GetRealArrayAsStringSep
' NAME
' GetRealArrayAsStringSep$(r[], indices%[], sep$)
' SYNOPSIS
' Converts the elements of r[] (indexed by indices%[], as from GetParameterProgression)
' to a string list, separated by the supplied separator.
' INPUTS
' r[] : array of values
' indices%[] : indices for accessing r[]
' sep$ : separator
' RETURN VALUE
' Returns a string containing the list of values from the array, separated by the supplied separator.
' NOTES
' The arrays r[] and indices%[] are like those returned from GetParameterProgression. 
'****

        
func GetRealArrayAsStringSep$(r[], indices%[], sep$)
    var s$;
    var i%;
    docase
    case Len(r[]) = 0 then
        return;
    case Len(r[]) = 1 then
        s$ := str$(r[indices%[0]]);
    else
        s$ := str$(r[indices%[0]]);
        for i% := 1 to Len(r[])-1 do
            s$ += sep$ + str$(r[indices%[i%]]);
        next        
    endcase
    return s$;
end

'****f* Spike2Util/MiscUtilities/GetIntegerArrayNAsString%
' NAME
' GetIntegerArrayNAsString$(a%[], n%)
' SYNOPSIS
' Converts the elements of a%[] to a comma-separated list. 
' INPUTS
' a%[] : array of values
' n% : number of elements in a%[]
' RETURN VALUE
' Returns a string containing comma-separated list of values from the array.
' NOTES
'****

func GetIntegerArrayNAsString$(a%[], n%)
    var s$;
    var i%;
    s$ := str$(a%[0]);
    for i% := 1 to n%-1 do
        s$ += ",";
        s$ += str$(a%[i%]);
    next
    return s$;
end


'****f* Spike2Util/MiscUtilities/GetIntegerArrayAsString%
' NAME
' GetIntegerArrayAsString$(a%[], indices%[])
' SYNOPSIS
' Converts the elements of a%[] (indexed by indices%[], as from GetParameterProgression)
' to a comma-separated list. 
' INPUTS
' a%[] : array of values
' indices%[] : indices for accessing r[]
' RETURN VALUE
' Returns a string containing comma-separated list of values from the array.
' NOTES
' The arrays a%[] and indices%[] are like those returned from GetParameterProgression. 
'****

func GetIntegerArrayAsString$(a%[], indices%[])
    return GetIntegerArrayAsStringSep$(a%[], indices%[], ",");
end


'****f* Spike2Util/MiscUtilities/GetIntegerArrayAsStringSep%
' NAME
' GetIntegerArrayAsStringSep$(a%[], indices%[], sep$)
' SYNOPSIS
' Converts the elements of a%[] (indexed by indices%[], as from GetParameterProgression)
' to a string list with the supplied separator.
' INPUTS
' a%[] : array of values
' indices%[] : indices for accessing r[]
' sep$ : separator for list
' RETURN VALUE
' Returns a string containing list of values from the array, separated by the separator provided.
' NOTES
' The arrays a%[] and indices%[] are like those returned from GetParameterProgression. 
'****

func GetIntegerArrayAsStringSep$(a%[], indices%[], sep$)
    var s$;
    var i%;
    docase
    case Len(a%[]) = 0 then
        return;
    case Len(a%[]) = 1 then
        s$ := str$(a%[indices%[0]]);
    else
        s$ := str$(a%[indices%[0]]);
        for i% := 1 to Len(a%[])-1 do
            s$ += sep$ + str$(a%[indices%[i%]]);
        next        
    endcase
    return s$;
end


'****f* Spike2Util/MiscUtilities/GridStimuli%
' NAME
' GridStimuli(Values1[],Values2[],Indices1%[],Indices2%[],IsRandom%,NRepeats%)
' SYNOPSIS
' Fills Indices1%[] and Indices2%[] with index values that allow for a 2-parameter
' tuning curve (values for curves 1 and 2 in Values1[], Values2[])
' INPUTS
' Values1[] : Values for first tuning curve
' Values2[] : Values for second tuning curve
' Indices1%[] : Will be filled with indices to Values1 to create 2-parameter tuning curve 
' Indices2%[] : Will be filled with indices to Values2 to create 2-parameter tuning curve 
' IsRandom% : If 1, randomize order (within each repeat)
' NRepeats% : Number of repeats
' RETURN VALUE
' Returns a success value, 0 = success, 1 = failure.
'****

func GridStimuli(Values1[],Values2[],j%,k%,&Indices1%[],&Indices2%[],IsRandom%,NRepeats%)
    var status% := 0;
    var i%;
    'var j%;
    'var k%;
    var n%;
    var totlen%;
    var temp%[1000];  'this is plenty big
    var list%[10000]; 'must be greater than total stimuli, if you go past 10000 total stimuli you're insane
    var tempI1%[10000];
    var tempI2%[10000];
    var I1%[10000];
    var I2%[10000];
    var blocklen%;
    var offset%;
    
    'j% := Len(Values1[]);  'e.g., j% = 5
    'k% := Len(Values2[]);  'e.g., k% = 3
    totlen% := j%*k%*NRepeats%;
    blocklen% := j%*k%;
    'Check to make sure that the Indices variables are long enough
    if totlen% > len(Indices1%[]) or totlen% > len(Indices2%[]) then
        status% := 1;
    else
        'if they are long enough, fill them
        'first, create a list of consecutive indices to put into Indices2%[] 
        for i% := 0 to k%-1 do
            temp%[i%] := i%;  'e.g., temp%[] = [0 1 2]
        next;
        
        'Do this for each repeat
        for n% := 0 to NRepeats%-1 do 
            
            'next, fill Indices1%[] with duplicate values for each repeat of k% 
            'and Indices2%[] with the list made above
            for i% := 0 to j%-1 do
                ArrConst(I1%[(k%*i%):k%],i%);           'e.g., [0 0 0 1 1 1 2 2 2 3 3 3 4 4 4]
                ArrConst(I2%[(k%*i%):k%],temp%[0:k%]);  'e.g., [0 1 2 0 1 2 0 1 2 0 1 2 0 1 2]
            next;
            
            'next, randomize if requested
            if IsRandom% <> 0 then
                Shuffle%(blocklen%,list%[]);  'get a shuffled list of indices in list%[]
                printlog("\n");
                ArrConst(tempI1%[0:blocklen%],I1%[0:blocklen%]);  'save current values
                ArrConst(tempI2%[0:blocklen%],I2%[0:blocklen%]);
                for i% := 0 to blocklen%-1 do
                    I1%[i%] := tempI1%[list%[i%]];
                    I2%[i%] := tempI2%[list%[i%]];
                next;
            endif;
            
            'put the whole shebang into the real variable
            ArrConst(Indices1%[offset%:blocklen%],I1%[0:blocklen%]);
            ArrConst(Indices2%[offset%:blocklen%],I2%[0:blocklen%]);
            
            offset% := offset% + j%*k%;  'increment offset
           
        next;
    endif;
    return status%;
end;


'InterleaveStrings$ will interleave two comma separated strings
'e.g. InterleaveStrings$("5,6,7","1,1,1") will return "5,1,6,1,7,1"

func InterleaveStrings$(x$,y$)
    var xy$;
    var xind%;
    var yind%;
    xind% := InStr(x$,",");
    while xind% > 0 do
        xy$ += Left$(x$,xind%);
        yind% := InStr(y$,",");
        xy$ += Left$(y$,yind%);
        x$ := DelStr$(x$,1,xind%);
        y$ := DelStr$(y$,1,yind%);
        'get next xind
        xind% := InStr(x$,",");
    wend;
    'Then there will be one value left in each string with no comma
    xy$ += x$;
    xy$ += ",";
    xy$ += y$;
    return xy$;
    
    
end;




'****f* Spike2Util/MiscUtilities/ArrFind%
' NAME
' ArrFind%(myArray%[],item%)
' SYNOPSIS
' returns the index of the first element matching item% in myArray%[]
' or -1 if myArray%[] doesn't contain item%
' INPUTS
' myArray%[] - an integer array
' item% - the value to find in the array
'****


func ArrFind%(myArray%[],item%)
    'returns the index of item% in myArray%[]
    'or -1 if myArray%[] doesn't contain item%
    var result%;
    var tempArray%[Len(myArray%[])];
    ArrConst(tempArray%[],myArray%[]);
    ArrSub(tempArray%[],item%);
    abs(tempArray%[]);
    result% := min(tempArray%[]);
    if tempArray%[result%]>0 then
        result% := -1;
    endif
    return result%;
end


'****f* Spike2Util/MiscUtilities/ArrFindFloat%
' NAME
' ArrFindFloat%(myArray[],item)
' SYNOPSIS
' returns the index of the first element (nearly) matching item in myArray[]
' or -1 if myArray[] doesn't contain item
' INPUTS
' myArray[] - a float array
' item - the value to find in the array
'
' Note that for the float version, there are always going to be precision issues.
' Rather than search for values that are exactly equal, we will get values that are
' merely "close".  How close is arbitrary.  But really, you're not going to do this
' on data or values that could be anything; you're going to do this on values that 
' are more or less, but their position in the array needs to be determined.  So "close"
' really only needs to be at the precision value of the stored numbers.
' Here, I've made the precision value very arbitrarily small; testing suggests that for 
' both integers (in float arrays) and various precision of decimals, this works.
'****


func ArrFindFloat%(myArray[],item)
    'returns the index of item in myArray[]
    'or -1 if myArray[] doesn't contain item
    var result%;
    var tempArray[Len(myArray[])];
    var precision := 0.000000000000001;
    ArrConst(tempArray[],myArray[]);
    ArrSub(tempArray[],item);
    abs(tempArray[]);
    result% := min(tempArray[]);
    if tempArray[result%]>precision then
        result% := -1;
    endif
    return result%;
end



'
'
'===== ArrUnique%() =====
'
'Will place unique values (sorted, ascending) from original%[] into unique%[].
'Returns number of elements placed into unique%[].
'Unique%[] is zeroed prior to operation to ensure no previously-held elements
'   are taken as being present in original%[].
'Unique%[] must be large enough to hold all unique values from original%[], but
'   we do not check to ensure that this will hold true (e.g. that unique%[] is
'   the same size as original%[]).
func ArrUnique%(original%[],&unique%[])
    var i%;
    var currVal%;
    var count% := 1;
    
    'ARRAYS ARE ALWAYS PASSED BY REFERENCE SO WE HAVE TO CREATE A LOCAL VARIABLE
    'TO AVOID CHANGING THE ORIGINAL%[] ARRAY
    var tempArray%[Len(original%[])];
    ArrConst(tempArray%[],original%[]);
    
    ArrConst(unique%[],0);
    ArrSort(tempArray%[]);    
    currVal% := tempArray%[0];
    unique%[0] := currVal%;
    for i% := 1 to Len(tempArray%[])-1 do  'don't need to check first element
        if tempArray%[i%] > currVal% then
            currVal% := tempArray%[i%];
            unique%[count%] := currVal%;
            count% += 1;
        endif
    next
    
    return count%;
    
end


'===== ArrUnique%() =====
'
'



'
'
'===== ArrSetDiff%() =====
'
'Will find elements of set1%[] that are not members of set2%[], and will place
'   those elements (unique) into setdiff%[].
'Returns number of elements placed into setdiff%[]
'Setdiff%[] is zeroed prior to operation to ensure no previously-held elements
'   are taken as being present in setdiff%[].
'Setdiff%[] must be large enough to hold all values from the operation, but we
'   do not check to ensure that this will hold true (e.g. that setdiff%[] is
'   the same size as set1%[]).
'Relies on ArrUnique%()
func ArrSetDiff%(set1%[],set2%[],&setdiff%[])
    var s1%;
    var s2%;
    var u1%[Len(set1%[])];
    var u2%[Len(set2%[])];
    var i%;
    var j%;
    var count%;
    
    'ARRAYS ARE ALWAYS PASSED BY REFERENCE SO WE HAVE TO CREATE A LOCAL VARIABLE
    'TO AVOID CHANGING THE SET1%[] AND SET2%[] ARRAYS
    var tempArray1%[Len(set1%[])];
    var tempArray2%[Len(set2%[])];
    ArrConst(tempArray1%[],set1%[]);
    ArrConst(tempArray2%[],set2%[]);
    
    ArrConst(setdiff%[],0);
    s1% := ArrUnique%(tempArray1%[],u1%[]);
    s2% := ArrUnique%(tempArray2%[],u2%[]);
    
    while i% < s1% do
        while u2%[j%] < u1%[i%] and j% < s2% do  'elements are increasing; if u2%[j%] is smaller
                                                 'than u1%[i%], then u2%[j%] is not present in u1%[],
                                                 'but we don't care about these elements, advance j%
                                                 'through u2%[] until we find an element that may be
                                                 'present in u1%[], do not advance past end of u2%[]
            j% += 1;
        wend
        
        if u1%[i%] = u2%[j%] then  'u1%[i%] is present in u2%[], advance both i% and j%
            i% += 1;
            j% += 1;
        else  'u2%[j%] > u1%[i%], OR u1[i%] > u2%[end]; u1%[i%] is not present in u2%[], place u1%[i%] 
              'in setdiff%[] and advance i%, increment count%
            setdiff%[count%] := u1%[i%];
            count% += 1;
            i% += 1;
        endif
        
        if j% > s2%-1 then
            j% := s2%-1;
        endif

    wend
    
    return count%;
    
end
'===== ArrSetDiff%() =====
'
'



'
'
'===== ArrRandIndices() =====
'
'Do you need to put random indices into an array?  Here's an easy way!
'If you only want to put random indices into a sub-array, pass a 
'sub-array!
proc ArrRandIndices(arr%[])
    var i%;
    for i% := 0 to Len(arr%[])-1 do
        arr%[i%] := i%;
    next
    ArrSort(arr%[],-1);
end
'===== ArrRandIndices() =====
'
'





'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' DealStimuliToBlocks - This function is designed to deal stimuli (or alternatively stimulus
' codes or other tokens) into a number of blocks.  Useful for counterbalancing.
'
' Inputs: result[] - a vector which will be filled with the resulting blocked stimuli
'         nTotal% - the total number of stimuli in the entire sequence, cannot be more than
'                   the length of result[]
'         nExistingBlocks% - the number of blocks created in previous calls to DealStimuliToBlocks
'                            should be 1 if this is the first call
'         nSteps% - the number of steps in the stimuli/codes/tokens to be placed into result[]
'                   it is an error for this value to be less than 2, because that would be stupid
'         firstVal - the first value in the stimuli/codes/tokens to be placed into result[]
'         lastVal - the last value in the stimuli/codes/tokens to be placed into result[]
'         iLog% - if 1, do progression in log, if 0, do linear
'
' Returns: nFinalBlocks%, the number of blocks in the current result[], or a negative error code
'
' Note that nTotal%/(nExistingBlocks%*nSteps%) MUST be an integer or the logic doesn't work - will
' return an error.
'
' For instance, imagine that you wish to counterbalance 3 spatial frequencies (0.5, 0.6, 0.7), 
' 3 orientations (0, 90, 180) and two conditions (left, right).  This is 3x3x2 = 18 stimuli, 
' which means that nTotal% would be 18.  We can represent L/R as -1 and 1 by making nSteps% = 2,
' firstVal = -1 and lastVal = 1.  nExistingBlocks% would start at 1.  resultLR[] would be:
' [-1 -1 -1 -1 -1 -1 -1 -1 -1  1  1  1  1  1  1  1  1  1]  (this is left/right)
' and nFinalBlocks% will return 2.
'
' Next, we'll do spatial frequency.  We call the same function but fill resultSF[].  nTotal% is
' unchanged (18) but nExistingBlocks% is now 2, nSteps% is 3, firstVal is 0.5 and lastVal is 0.7.
' We get:
' [0.5 0.5 0.5 0.6 0.6 0.6 0.7 0.7 0.7 0.5 0.5 0.5 0.6 0.6 0.6 0.7 0.7 0.7]  (this is SF)
' and nFinalBlocks% will return 6.
'
' Finally, we'll do orientation.  We call the same function but fill resultOR[].  nTotal% is
' unchanged (18) but nExistingBlocks% is now 6, nSteps% is 3, firstVal is 0 and lastVal is 180.
' We get:
' [0 90 180 0 90 180 0 90 180 0 90 180 0 90 180 0 90 180]  (This is orientation)
' and nFinalBlocks% will return 18
'
' Putting these all together:
' [-1  -1  -1  -1  -1  -1  -1  -1  -1  1   1   1   1   1   1   1   1   1  ]  (resultLR[])
' [0.5 0.5 0.5 0.6 0.6 0.6 0.7 0.7 0.7 0.5 0.5 0.5 0.6 0.6 0.6 0.7 0.7 0.7]  (resultSF[])
' [0   90  180 0   90  180 0   90  180 0   90  180 0   90  180 0   90  180]  (resultOR[])
'
' You can see that the three vectors are counterbalanced.
'
' To call these in a randomized block, just call Shuffle%() once to get indices for each block.
'
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

func DealStimuliToBlocks%(&result[],nTotal%,nExistingBlocks%,nSteps%,firstVal,lastVal,iLog%)
    var nFinalBlocks%;
    var firstlog, lastlog, stepsize;
    var i%; 'loop through each current block
    var j%; 'loop through tuning curve steps
    var k%; 'loop through repeats at the lowest level
    var l%; 'index to result
    var nRepeats%; 'the number of repeats at the lowest level
    
    if nTotal% mod (nExistingBlocks%*nSteps%) > 0 then
        message("The total number of steps and blocks does not evenly divide the total size of the vector to create!");
        return -1;
    endif;
    
    nRepeats% := nTotal%/(nExistingBlocks%*nSteps%);
    
    docase
    case nSteps% = 1 then  'if there is only one step, we've got several things to do - first, avoid divide by zero in other case blocks!
        iLog% := 0;  'set iLog% to zero because there you can't meaningfully log-space a single value
        if firstval <> lastval then  'make sure firstval = lastval, otherwise which do you pick?
            message("First value and last value must be the same if nSteps% is 1!");
            return -1;
        endif;
    case iLog% <> 0 then
        if firstval <= 0 or lastval <= 0 then
            message("Attempt to perform log spacing on 0 or negative value!");
            return -1;
        endif;
        ' Generate log progression
        firstlog := log(firstval);
        lastlog := log(lastval);
        stepsize := (lastlog - firstlog)/(nSteps%-1);
    else
        ' Generate linear progression
        stepsize := (lastval - firstval)/(nSteps%-1);
    endcase;
    
    for i% := 1 to nExistingBlocks% do
    
        if iLog% <> 0 then
            for j% := 0 to nSteps%-1 do
                for k% := 1 to nRepeats% do
                    result[l%] := pow(10, firstlog + j% * stepsize);
                    l% += 1;
                next;
            next;
        else
            for j% := 0 to nSteps%-1 do
                for k% := 1 to nRepeats% do
                    result[l%] := firstval + j% * stepsize;
                    l% += 1;
                next;    
            next;
        endif
    
    next
    
    
    nFinalBlocks% := nExistingBlocks%*nSteps%;
    return nFinalBlocks%;
end


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' EqualizeSMRFilenumbers(dataPath$,mTemplate$,pTemplate$)
' 
' A function that searches the data path for files with auto-naming conventions (i.e. 001-999)
' created during Plexon recordings (one Micro file, one Power file) and, if the two 
' highest-numbered files do not have the same number (e.g. if there was a record/save error),
' will create a dummy file to equalize the numbers.  This will ensure that subsequent auto-naming
' goes as planned.
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func EqualizeSMRFilenumbers(dataPath$,mTemplate$,pTemplate$)

var oldDir$;
var micro$;
var power$;
var ret%;
var ret2%;
var numMicro$;
var numPower$;
var numMicro%;
var numPower%;
var writeNum%;
var mymaxNum%;
var thisNum$;
var check%;
var i%;

oldDir$ := FilePath$();  'Get currrent directory
FilePathSet(dataPath$);  'move to data directory
printlog("Old dir is %s, current dir is %s, supposed to go to %s\n",oldDir$,FilePath$(),dataPath$);
    
'get highest-numbered micro/power file names
ret% := FileList(micro$,0,mTemplate$+"*");
ret2% := FileList(power$,0,pTemplate$+"*");

    
if ret% > 0 then
    'numMicro$ := HighestValue$(ret%,mTemplate$);
    HighestValue(ret%,mTemplate$,numMicro$);
    numMicro% := Val(numMicro$);  'This looks inefficient, but having numMicro$ as a string saves several lines later
endif

if ret2% > 0 then
    'numPower$ := HighestValue$(ret2%,pTemplate$);
    HighestValue(ret2%,pTemplate$,numPower$);
    numPower% := Val(numPower$);
endif

'printlog("micro = %d power = %d\n",numMicro%,numPower%);
        
    
if numMicro% > numPower% then
    mymaxNum% := numMicro%;
else
    mymaxNum% := numPower%;
endif;
       
if ret% = 0 and ret2% = 0 then
    mymaxNum% := -1;
endif    
'printlog("MaxNum is %d\n",mymaxNum%);  
    
'mymaxNum% := 3; 'testing
    
for i% := 0 to mymaxNum% do
    docase
    case i% < 10 then
        thisNum$ := "00" + str$(i%);
    case i% < 100 then
        thisNum$ := "0" + str$(i%);
    else
        thisNum$ := str$(i%);
    endcase
        
    check% := FileOpen(pTemplate$+thisNum$+".smr",8,0);  'check for existence of power file
    if check% < 0 then 'file does not exist, create dummy file
        FileOpen(pTemplate$+thisNum$+".smr",8,1);
        Print("Fake file");
        FileClose(0);  'Closes file that has been written
        printlog("Wrote fake file %s\n",pTemplate$+thisNum$+".smr");
    else
        FileClose(0);  'if the file exists, just close the file
    endif
    check% := FileOpen(mTemplate$+thisNum$+".smr",8,0);  'check for existence of micro file
    if check% < 0 then 'file does not exist, create dummy file
        FileOpen(mTemplate$+thisNum$+".smr",8,1);
        Print("Fake file");
        FileClose(0);  'Closes file that has been written
        printlog("Wrote fake file %s\n",mTemplate$+thisNum$+".smr");
    else
        FileClose(0);  'if the file exists, just close the file
    endif
    check% := FileOpen(pTemplate$+thisNum$+".smrx",8,0);  'check for existence of power file
    if check% < 0 then 'file does not exist, create dummy file
        FileOpen(pTemplate$+thisNum$+".smrx",8,1);
        Print("Fake file");
        FileClose(0);  'Closes file that has been written
        printlog("Wrote fake file %s\n",pTemplate$+thisNum$+".smrx");
    else
        FileClose(0);  'if the file exists, just close the file
    endif
    check% := FileOpen(mTemplate$+thisNum$+".smrx",8,0);  'check for existence of micro file
    if check% < 0 then 'file does not exist, create dummy file
        FileOpen(mTemplate$+thisNum$+".smrx",8,1);
        Print("Fake file");
        FileClose(0);  'Closes file that has been written
        printlog("Wrote fake file %s\n",mTemplate$+thisNum$+".smrx");
    else
        FileClose(0);  'if the file exists, just close the file
    endif
        
next;
    
    
    
FilePathSet(oldDir$);  'go back to where we started
    
end



''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc DoSampleAutoName(key$,long$,short$,primary$,secondary$)
    'This function will do the auto-naming of files.  It will take into account the setup of the system
    '(if there are one or two 1401s, and whether this is a micro/power or primary/secondary relationship)
    'The long$ name should be 8 characters or fewer
    'The short$ name should be 3 character or fewer
    
    if UseTwo1401s% = 0 then
        SampleAutoName$(dataCellName$ + "_" + long$ + "_000");  'NOTE: maximum of 13 characters!!!
    else
        EqualizeSMRFilenumbers(dataPathRoot$ + "\\" + dataDataSet$,dataCellName$+"_" + short$ + primary$ + "_",dataCellName$+"_" + short$ + secondary$ + "_");
        SampleAutoName$(dataCellName$ + "_" + short$ + primary$ + "_000");  'NOTE: maximum of 13 characters!!!
        SetStringRegistryValue(key$, "pref", short$);
    endif;    
end



''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' out$ = HighestValue$(nVals%,template$)
' 
' This is a subfunction for EqualizeSMRFilenumbers(), needed only because we don't know how many
' files will be in the data directory, by calling a new function we can make the array to hold
' the filenames the correct size (can't initialize an array to a variable, but CAN to an input
' argument.  Go figure.
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
proc HighestValue(nVals%,template$,&myout$)
    var myArray$[nVals%];
    'var myout$;
    var highest%;
    var temp$;
    var temp%;
    var i%;
    var h%;
    'Get the complete file list
    h% := FileList(myArray$[],0,template$+"*");
    'printlog("How many is %d\n",h%);
    for i% := 0 to nVals%-1 do
        temp$ := Mid$(myArray$[i%],Len(template$)+1,3);
        temp% := Val(temp$);
        if temp% > highest% then
            highest% := temp%;
            myout$ := temp$;
        endif;
    next
    'return myout$;      
end

'A simple function to expand and shuffle
func ShuffleAndExpand(nVals%,nRepeats%,&indices%[],random%)
    if len(indices%[]) < nVals%*nRepeats% then
        return 0;  'not enough space to perform requested operation in indices%[]
    endif;
    
    var tempInds%[nVals%];  'make temp list of indices 0:n-1
    var i%;
    'fill tempinds with indices 0:n-1
    for i% := 0 to nVals%-1 do
        tempInds%[i%] := i%; 
    next;
    
    for i% := 0 to nRepeats%-1 do
        if random% = 1 then
            Shuffle%(nVals%,tempInds%[]);
        endif;
        ArrConst(indices%[i%*nVals%:nVals%],tempInds%[0:nVals%])
    next
    return 1;
end



'A function that will take a one-byte value (0-255) and will return the binary representation
'in the first 8 indices of BINARY%[].  If BYTE is greater than 255 or less than 0, will return 0 
'and will not fill BINARY%[], otherwise fills the first 8 indices of BINARY% and returns 1.
func Byte2Binary(byte%,&binary%[])
    var i%;
    var j%;
    
    docase
    case byte% > 255 then
        message("Byte2Binary has been given a value over 255!  Error!");
        return 0;
    case byte% < 0 then
        message("Byte2Binary has been given a value below 0!  Error!");
        return 0;
    endcase;
    
    for i% := 1 to 8 do
        j% := pow(2,8-i%);
        if byte% > j%-1 then
            binary%[8-i%] := 1;
            byte% := byte% - j%;
        else
            binary%[8-i%] := 0;
        endif
    next
        
    return 1;
end



'====== Serial Utilities ======
'
'

'New Feb 2022

'In order to allow "jumping" from one stimulus on the VSG to another (rather than simply "advancing")
'we have implemented a serial communication  (via virtual, not physical ports) that allows us to send
'a command to the VSG.  There are a few things that must be done for this to all work, better to 
'collect them all in a function included in every script than to recapitulate them in each script.
'
'Each script that wishes to implement non-sequential stimulus order will need to do three things:
'1) Run OpenSerialPortToVSG() before the start of sampling
'2) Include " + SerialArg$ + " in the command-line arguments.  SerialArg$ will be defined here and 
'   need not be defined in the script. (This is similar to FixationArg$, which is added to basically 
'   all command lines but generated in a util script.)  
'3) Call JumpOrAdvance%() with a zero-based trial index to jump to that trial, or no argument (or -1)
'   to advance to the next trial


' Variables for serial comms 
var serialcmd$;
var serialIsOpen%;
var lastStimulusIndex%;
var SerialArg$ := " --serial COM8 ";  'Include SerialArg$ in command line arguments to use JumpOrAdvance%()


' Functions for serial comms

func OpenSerialPortToVSG()
    ' Open serial port for VSG comms re: stimulus jump-advance
    if SerialOpen(9, 115200) < 0 then
        Message("Cannot open serial port com9!");
        halt;
    endif
    serialIsOpen% := 1;
    return 0;
end


func JumpOrAdvance%(n% := -1)
    if serialIsOpen% = 1 then
        if n% < 0 then  'if no value entered, simply advance
            n% := lastStimulusIndex% + 1;
        endif
        lastStimulusIndex% := n%;
        serialcmd$ := "g " + str$(n%) + ";";   'zero-based - what happens on VSG if this value exceeds the number of stimuli defined?
        'PrintLog("Write serial cmd: " + serialcmd$ + "\n");
        SerialWrite(9, serialcmd$);
        return lastStimulusIndex%;
    else
        message("JumpOrAdvance%() cannot be used without opening the serial port with OpenSerialPortToVSG()!");
        return -1;  'return failure
    endif
end



'
'
'====== End Serial Utilities ======


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' SendTrialToMiddle%(nTrials%,unfinishedTrial%,minToSkip%,&trialOrder%[])
'
' This function may be used after an interrupt or otherwise rejected/unfinished  
' trial.  The default behavior will be to send the unfinished trial to a random
' middle position in the remainder of the trials.  For instance, if the 34th of
' 200 defined trials is unfinished, it will be placed in a random position between
' #34 and #199.  If it were to be placed at trial #42, then trials #35-42 would
' be bumped forward one position to #34-41, the old #34 is placed at #42, and 
' #43-199 are unchanged.  The trial counter is not advanced, so old trial #35
' (now trial #34) will be the next stimulus.
'
' nTrials% is the total number of trials
' unfinishedTrial% is the trial to reorder
' minToSkip% is the minimum number of trials to elapse before reinsertion
' trialOrder%[] is the current trial order, which will be updated
'
' If minToSkip% is set, the unfinished trial will not be inserted until at least
' that many trials have elapsed, if possible.  If there are not enough trials remaining
' to obey minToSkip%, the unfinished trial will be placed at the end.
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func SendTrialToMiddle%(nTrials%,unfinishedTrial%,minToSkip%,&trialOrder%[])
    
    var status% := -1;  '-1 is failure status
    var minpos%;
    var maxpos%;
    var newpos%;
    var tempTrialOrder%;
    
    if unfinishedTrial% < nTrials%-1 then  'unfinishedTrial% is an index, but nTrials% is a count
        minpos% := unfinishedTrial% + minToSkip%;  'in index units
        maxpos% := nTrials%-1;  'now also in index units
        'determine new position in which to put unfinishedTrial%
        if minpos% < maxpos% then
            newpos% := floor(rand(maxpos%-minpos%+1,minpos%));  'this works, in index units
            status% := 1;  'status indicates full success
        else
            newpos% := maxpos%;  'if minimum position is beyond the end of trials, just put at the end
            status% := 0;  'status indicates success in returning a legal value, but failure to randomize due to being at end of trials
        endif;
        'now insert trial, shifting as required
        docase
        case newpos% = unfinishedTrial% then
            'do nothing, trial will repeat
        case newpos% = maxpos% then
            tempTrialOrder% := trialOrder%[unfinishedTrial%];
            arrconst(trialOrder%[unfinishedTrial%:maxpos%-unfinishedTrial%],trialOrder%[unfinishedTrial%+1:maxpos%-unfinishedTrial%]); 
            trialOrder%[newpos%] := tempTrialOrder%;  
        else
            tempTrialOrder% := trialOrder%[unfinishedTrial%];
            arrconst(trialOrder%[unfinishedTrial%:newpos%-unfinishedTrial%],trialOrder%[unfinishedTrial%+1:newpos%-unfinishedTrial%]); 
            trialOrder%[newpos%] := tempTrialOrder%; 
        endcase        
    else
        'Don't do anything here - if it is the last trial it will automatically repeat, that's the only option
        status% := 0;  'status indicates success in returning a legal value, but failure to randomize due to being at end of trials
    endif;
      
    return status%;
end






'''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' String2FloatArray%(instr$,&array[])
'
' This function reads floats from a space-separated string of floats, and places  
' read floats in array[].  The function returns the number of floats found.  If
' more floats are found than the length of array[], a modal message box will 
' inform the user of the error and array[] will be filled to the maximum extent
' possible.  Only numeric characters (including decimal points and negative signs)
' and spaces are allowed in instr$.  Any other characters will result in an error
' and a read of 0 values.
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func String2FloatArray%(instr$,&array[])
    var count%;
    var ind%;
    var tempStr$ := "";
    var nCh%;
    var tempNum;
    
    while ind% <= Len(instr$) do
        if Mid$(instr$,ind%+1,1) = " " or ind% = Len(instr$) then 'when we find a separator, check to see if tempStr$ is a number, if so, place into array[]
            if Len(tempStr$) > 0 then  
                tempNum := Val(tempStr$,nCh%);
                if nCh% = Len(tempStr$) then  'make sure entire string was converted to number, if fewer characters converted, string is corrupt
                    if count% >= Len(array[]) then  'make sure there are not too many floats in the input string
                        Message("There were more float values in the input string than elements in the container\narray (" + Str$(Len(array[])) + ")!  Returning first " + Str$(Len(array[])) + " values!");
                        return count%;  'but return the number that were actually read
                    endif
                    array[count%] := tempNum;
                    count% += 1;
                else 'if there's an error, bail out claiming read of 0 values
                    Message("Non-numeric character found in input string at: " + tempStr$);
                    ArrConst(array[],0);
                    count% := 0;
                    return count%;
                endif
            else
                'tempStr$ will be empty if there is a double-separator, just noting the explicit skip here
            endif
            tempStr$ := "";  'reset tempStr$ after finding separator
        else 'if we are not looking at a separator, build tempStr$  
            tempStr$ += Mid$(instr$,ind%+1,1);
        endif
        ind% += 1;
    wend
    return count%;
end



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' String2IntArray%(instr$,&array%[])
'
' This function reads ints from a space-separated string of ints, and places  
' read ints in array%[].  The function returns the number of ints found.  If
' more ints are found than the length of array%[], a modal message box will 
' inform the user of the error and array%[] will be filled to the maximum extent
' possible.  Only numeric characters and negative signs (no decimal points)
' and spaces are allowed in instr$.  Any other characters will result in an error
' and a read of 0 values.
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func String2IntArray%(instr$,&array%[])
    var count%;
    var ind%;
    var tempStr$ := "";
    var nCh%;
    var tempNum%;
    
    while ind% <= Len(instr$) do
        if Mid$(instr$,ind%+1,1) = " " or ind% = Len(instr$) then 'when we find a separator, check to see if tempStr$ is a number, if so, place into array[]
            if Len(tempStr$) > 0 then  
                tempNum% := Val(tempStr$,nCh%);
                if nCh% = Len(tempStr$) then  'make sure entire string was converted to number, if fewer characters converted, string is corrupt
                    if count% >= Len(array%[]) then  'make sure there are not too many floats in the input string
                        Message("There were more int values in the input string than elements in the container\narray (" + Str$(Len(array%[])) + ")!  Returning first " + Str$(Len(array%[])) + " values!");
                        return count%;  'but return the number that were actually read
                    endif
                    array%[count%] := tempNum%;
                    count% += 1;
                else 'if there's an error, bail out claiming read of 0 values
                    Message("Non-numeric character found in input string at: " + tempStr$);
                    ArrConst(array%[],0);
                    count% := 0;
                    return count%;
                endif
            else
                'tempStr$ will be empty if there is a double-separator, just noting the explicit skip here
            endif
            tempStr$ := "";  'reset tempStr$ after finding separator
        else 'if we are not looking at a separator, build tempStr$ 
            'But check for illegal decimal
            if Mid$(instr$,ind%+1,1) <> "." then
                tempStr$ += Mid$(instr$,ind%+1,1);
            else
                Message("Illegal decimal character found in input string at position " + Str$(ind%+1));
                ArrConst(array%[],0);
                count% := 0;
                return count%;
            endif
        endif
        ind% += 1;
    wend
    return count%;
end


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' The vdac32% function converts a value in user DAC units into an integer value
'  (the result of the function) suitable for passing into a sequencer variable
'  for use in the DAC, ADDAC, RAMP and OFFSET sequencer instructions. It mimics
'  the vdac32() expression in the text sequence compiler.
'
' out     is the output value that you want to generate, in user DAC units.
' scale   is the user DAC units corresponding to one volt on the actual DAC
'         (or two volts for a ten-volt system). This is exactly the same as
'         the DACscale field used with the SET or SDAC directives.
' offset  is the user DAC units corresponding to zero volts output. This is
'         exactly the same as the DACOffset field in SET or SDAC.
'
' If you want to use this function to calculate the slope for a ramp, use
'  vdac32%(volts/sticks%(time)) for maximum accuracy.
'
func vdac32%(out, scale, offset)
var v32;                                ' Real variable for the calculation
out := out - offset;                    ' First compensate for offset
v32 := ((out * (6553.6 / scale)) * 65536.0);   ' Floating point result
var v32%;                               ' Integer value for the result
if v32 > 2147483647.0 then              ' 2147483647 is the largest positive
    v32% := 2147483647;                 '  integer value
else
    if v32 < -2147483647.0 then         ' -2147483648 is the lowest negative value
        v32% := -2147483647;            '  but we have to stay one above that
    else
        v32% := round(v32);             ' We can be sure this will not overflow
    endif;
endif;
return v32%;
end